private function HBV_masterMix( device & NimbusChannel, variable intNumberOfSample ) void ;
private function HBV_masterMix_aspirate( device & NimbusChannel ) void ;
function HIV_masterMix( device & NimbusChannel, variable intNumberOfSample ) void ;
private function MasterMix_dispense_eject( device & NimbusChannel, variable intVolumeMasterMix_default, variable intSampleEndPosition, variable stringPipetteVariable ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function HBV_masterMix( device & NimbusChannel, variable intNumberOfSample ) void {
  private variable stringPipetteVariable;
  private variable intVolumeWater_default;
  private variable intVolumeSample_default;
  private variable intVolumeMasterMix_default;
  private variable intVolumeIC_default;
  private variable intVolumeQS_default;
  intVolumeMasterMix_default = 30;
  intVolumeQS_default = 20;
  intVolumeSample_default = 20;
  intVolumeWater_default = 20;
  intVolumeIC_default = 2;
  stringPipetteVariable = Translate("");
}

private function HBV_masterMix_aspirate( device & NimbusChannel ) void {
  private variable stringPipetteVariable;
  private variable intVolumeMasterMix_aspirate;
  private variable intRemainSample;
  private variable intVolumeMasterMix_default;
  private variable intSampleEndPosition;
  intVolumeMasterMix_default = 30;
  stringPipetteVariable = Translate("");
  intSampleEndPosition = intNumberOfSample + 6;
  stringPipetteVariable = Translate("1000");
  if (intSampleEndPosition < 50)
  {
    if (intSampleEndPosition <= 33)
    {
      intVolumeMasterMix_aspirate = intVolumeMasterMix_default * intSampleEndPosition;
      {
        	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
      }
      MECC::TraceComment(Translate("change MasterMix sequnces to MasterMix_1 sequences"));
      NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
      MasterMix_dispense_eject(NimbusChannel, intVolumeMasterMix_default, intSampleEndPosition, stringPipetteVariable);
    }
    else
    {
      intSampleEndPosition = 33;
      intVolumeMasterMix_aspirate = intVolumeMasterMix_default * intSampleEndPosition;
      {
        	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
      }
      MECC::TraceComment(Translate("change MasterMix sequnces to MasterMix_1 sequences"));
      NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
      MasterMix_dispense_eject(NimbusChannel, intVolumeMasterMix_default, intSampleEndPosition, stringPipetteVariable);
      intSampleEndPosition = intNumberOfSample + 6;
      intRemainSample = intSampleEndPosition - 33;
      intSampleEndPosition = intRemainSample;
      intVolumeMasterMix_aspirate = intVolumeMasterMix_default * intSampleEndPosition;
      {
        	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
      }
      MECC::TraceComment(Translate("change MasterMix sequnces to MasterMix_1 sequences to aspirate remain volume in tube 1"));
      NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
      MasterMix_dispense_eject(NimbusChannel, intVolumeMasterMix_default, intSampleEndPosition, stringPipetteVariable);
    }
  }
  else
  {
    intSampleEndPosition = 33;
    intVolumeMasterMix_aspirate = intVolumeMasterMix_default * intSampleEndPosition;
    intVolumeMasterMix_aspirate = intVolumeMasterMix_default * intSampleEndPosition;
    {
      	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
    }
    MECC::TraceComment(Translate("change MasterMix sequnces to MasterMix_1 sequences"));
    NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
    MasterMix_dispense_eject(NimbusChannel, intVolumeMasterMix_default, intSampleEndPosition, stringPipetteVariable);
    intSampleEndPosition = 17;
    intVolumeMasterMix_aspirate = intVolumeMasterMix_default * intSampleEndPosition;
    {
      	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
    }
    MECC::TraceComment(Translate("change MasterMix sequnces to MasterMix_1 sequences to aspirate remain volume in tube 1"));
    NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
    MasterMix_dispense_eject(NimbusChannel, intVolumeMasterMix_default, intSampleEndPosition, stringPipetteVariable);
    intSampleEndPosition = intNumberOfSample + 6;
    intRemainSample = intSampleEndPosition - 50;
    intSampleEndPosition = intRemainSample;
    intVolumeMasterMix_aspirate = intVolumeMasterMix_default * intSampleEndPosition;
    {
      	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
    }
    MECC::TraceComment(Translate("change MasterMix sequnces to MasterMix_2 sequences to aspirate remain volume in tube 2"));
    NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
    MasterMix_dispense_eject(NimbusChannel, intVolumeMasterMix_default, intSampleEndPosition, stringPipetteVariable);
  }
}

private function MasterMix_dispense_eject( device & NimbusChannel, variable intVolumeMasterMix_default, variable intSampleEndPosition, variable stringPipetteVariable ) void {
  private variable intCurrentPosition;
  private variable loopCounter_DW96_masterMix;
  if(0){
    intVolumeMasterMix_default = 30;
    stringPipetteVariable = Translate("10000000");
  }
  {
    loopCounter_DW96_masterMix = 0;
    while (
       (NimbusChannel.White_Strip_01_1.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, NimbusChannel.White_Strip_01_1, 1);
      loopCounter_DW96_masterMix = loopCounter_DW96_masterMix + 1;
      NimbusChannel._5D3B503A_1069_44C1_9284_266B7CC0D14C("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"); // Dispense
      intCurrentPosition = NimbusChannel.White_Strip_01_1.GetCurrentPosition();
      if (intCurrentPosition > intSampleEndPosition)
      {
        MECC::TraceComment(Translate("loop break"));
        break;
      }
      if (
         (NimbusChannel.White_Strip_01_1.GetCurrentPosition() > 0 && NimbusChannel.White_Strip_01_1.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    NimbusChannel.White_Strip_01_1.SetMax(NimbusChannel.White_Strip_01_1.GetTotal());
  }
  {
    	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
  }
}

function HIV_masterMix( device & NimbusChannel, variable intNumberOfSample ) void {
  private variable loopCounter7;
  private variable intVolume_water;
  private variable intVolume_MasterMix_A_aspirate;
  private variable loopCounter8;
  private variable intEndPosition_sample_1;
  private variable breakPoint;
  private variable loopCounter9;
  private variable i;
  private variable intVolume_IC_aspirate;
  private variable stringPipetteVariable;
  private variable intVolume_MasterMix_B_aspirate;
  private variable intSampleEndPosition_1;
  private variable intVolume_IC;
  private variable intEndPosition_QS;
  private variable loopCounter1;
  private variable intCurrentPosition_sample;
  private variable loopCounter2;
  private variable intVolume_sample;
  private variable intVolume_masterMix_A;
  private variable intSampleEndPosition;
  private variable intVolume_masterMix_B;
  private variable loopCounter4;
  private variable intVolume_QS;
  private variable loopCounter6;
  intVolume_masterMix_A = 12;
  intVolume_masterMix_B = 18;
  intVolume_sample = 20;
  intVolume_IC = 2;
  intVolume_QS = 20;
  intVolume_water = 20;
  stringPipetteVariable = Translate("");
  breakPoint = 24;
  intSampleEndPosition = intNumberOfSample + 5;
  if (intSampleEndPosition > breakPoint)
  {
    stringPipetteVariable = Translate("1000");
    intVolume_MasterMix_A_aspirate = intVolume_masterMix_A * breakPoint;
    {
      	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
    }
    NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
    {
      loopCounter1 = 0;
      NimbusChannel.White_Strip_01_1.SetCurrentPosition(1);
      while (
         (NimbusChannel.White_Strip_01_1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, NimbusChannel.White_Strip_01_1, 1);
        loopCounter1 = loopCounter1 + 1;
        NimbusChannel._5D3B503A_1069_44C1_9284_266B7CC0D14C("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"); // Dispense
        if (loopCounter1 == breakPoint)
        {
          break;
        }
        if (
           (NimbusChannel.White_Strip_01_1.GetCurrentPosition() > 0 && NimbusChannel.White_Strip_01_1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      NimbusChannel.White_Strip_01_1.SetMax(NimbusChannel.White_Strip_01_1.GetTotal());
    }
    {
      	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
    }
    intSampleEndPosition_1 = intSampleEndPosition - breakPoint;
    intVolume_MasterMix_A_aspirate = intVolume_masterMix_A * intSampleEndPosition_1;
    {
      	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
    }
    NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
    {
      loopCounter2 = 0;
      while (
         (NimbusChannel.White_Strip_01_1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, NimbusChannel.White_Strip_01_1, 1);
        loopCounter2 = loopCounter2 + 1;
        NimbusChannel._5D3B503A_1069_44C1_9284_266B7CC0D14C("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"); // Dispense
        if (loopCounter2 == intSampleEndPosition_1)
        {
          break;
        }
        if (
           (NimbusChannel.White_Strip_01_1.GetCurrentPosition() > 0 && NimbusChannel.White_Strip_01_1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      NimbusChannel.White_Strip_01_1.SetMax(NimbusChannel.White_Strip_01_1.GetTotal());
      NimbusChannel.White_Strip_01_1.SetCurrentPosition(1);
    }
    {
      	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
    }
  }
  if (intSampleEndPosition <= breakPoint)
  {
    stringPipetteVariable = Translate("10000000");
    intVolume_MasterMix_A_aspirate = intVolume_masterMix_A * intSampleEndPosition;
    {
      	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
    }
    NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
    {
      loopCounter4 = 0;
      while (
         (NimbusChannel.White_Strip_01_1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, NimbusChannel.White_Strip_01_1, 1);
        loopCounter4 = loopCounter4 + 1;
        NimbusChannel._5D3B503A_1069_44C1_9284_266B7CC0D14C("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"); // Dispense
        if (loopCounter4 == intSampleEndPosition)
        {
          break;
        }
        if (
           (NimbusChannel.White_Strip_01_1.GetCurrentPosition() > 0 && NimbusChannel.White_Strip_01_1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      NimbusChannel.White_Strip_01_1.SetMax(NimbusChannel.White_Strip_01_1.GetTotal());
      NimbusChannel.White_Strip_01_1.SetCurrentPosition(1);
    }
    {
      	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
    }
  }
  MECC::TraceComment(Translate("master mix A done"));
  intSampleEndPosition = intNumberOfSample + 5;
  if (intSampleEndPosition > breakPoint)
  {
    stringPipetteVariable = Translate("10000000");
    intVolume_MasterMix_B_aspirate = intVolume_masterMix_B * breakPoint;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    {
      loopCounter5 = 0;
      while (
         (White_Strip_0001.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, White_Strip_0001, 1);
        loopCounter5 = loopCounter5 + 1;
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (loopCounter5 == breakPoint)
        {
          break;
        }
        if (
           (White_Strip_0001.GetCurrentPosition() > 0 && White_Strip_0001.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      White_Strip_0001.SetMax(White_Strip_0001.GetTotal());
      White_Strip_0001.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    intSampleEndPosition_1 = intSampleEndPosition - breakPoint;
    intVolume_MasterMix_B_aspirate = intVolume_masterMix_B * intSampleEndPosition_1;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    {
      loopCounter6 = 0;
      while (
         (White_Strip_0001.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, White_Strip_0001, 1);
        loopCounter6 = loopCounter6 + 1;
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (loopCounter6 == intSampleEndPosition_1)
        {
          break;
        }
        if (
           (White_Strip_0001.GetCurrentPosition() > 0 && White_Strip_0001.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      White_Strip_0001.SetMax(White_Strip_0001.GetTotal());
      White_Strip_0001.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  if (intSampleEndPosition <= breakPoint)
  {
    stringPipetteVariable = Translate("10000000");
    intVolume_MasterMix_B_aspirate = intVolume_masterMix_B * intSampleEndPosition;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    {
      loopCounter7 = 0;
      while (
         (White_Strip_0001.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, White_Strip_0001, 1);
        loopCounter7 = loopCounter7 + 1;
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (loopCounter7 == intSampleEndPosition)
        {
          break;
        }
        if (
           (White_Strip_0001.GetCurrentPosition() > 0 && White_Strip_0001.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      White_Strip_0001.SetMax(White_Strip_0001.GetTotal());
      White_Strip_0001.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  MECC::TraceComment(Translate("master mix B done"));
  intVolume_IC_aspirate = intVolume_IC * 5;
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  {
    loopCounter8 = 0;
    White_Strip_0001.SetCurrentPosition(1);
    while (
       (White_Strip_0001.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, White_Strip_0001, 1);
      loopCounter8 = loopCounter8 + 1;
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      if (loopCounter8 == 5)
      {
        break;
      }
      if (
         (White_Strip_0001.GetCurrentPosition() > 0 && White_Strip_0001.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    White_Strip_0001.SetMax(White_Strip_0001.GetTotal());
    White_Strip_0001.SetCurrentPosition(1);
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  intEndPosition_QS = 4;
  stringPipetteVariable = Translate("11110000");
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  {
    loopCounter9 = 0;
    White_Strip_0001.SetCurrentPosition(1);
    while (
       (White_Strip_0001.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, White_Strip_0001, 1);
      loopCounter9 = loopCounter9 + 1;
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      break;
      if (
         (White_Strip_0001.GetCurrentPosition() > 0 && White_Strip_0001.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    White_Strip_0001.SetMax(White_Strip_0001.GetTotal());
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  stringPipetteVariable = Translate("10000000");
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  i = 0;
  intEndPosition_sample_1 = 1;
  //find pipette varaiable
  // +5 in end position sample becuase of using same sequence
  i=intNumberOfSample%8;
  intEndPosition_sample_1=intNumberOfSample-i+5;
  if (intNumberOfSample < 8)
  {
    if(i==7){stringPipetteVariable="11111110";}
    if(i==6){stringPipetteVariable="11111100";}
    if(i==5){stringPipetteVariable="11111000";}
    if(i==4){stringPipetteVariable="11110000";}
    if(i==3){stringPipetteVariable="11100000";}
    if(i==2){stringPipetteVariable="11000000";}
    if(i==1){stringPipetteVariable="10000000";}
    {
      loopCounter9 = 0;
      while (
         (ML_STAR.DWP96_Magnet.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.DWP96_Magnet, 1);
        loopCounter9 = loopCounter9 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        intCurrentPosition_sample = DW96_Magnet.GetCurrentPosition();
        if (intCurrentPosition_sample > intEndPosition_sample_1)
        {
          MECC::TraceComment(Translate("loop break"));
          break;
        }
        if (
           (ML_STAR.DWP96_Magnet.GetCurrentPosition() > 0 && ML_STAR.DWP96_Magnet.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.DWP96_Magnet.SetMax(ML_STAR.DWP96_Magnet.GetTotal());
      ML_STAR.DWP96_Magnet.SetCurrentPosition(1);
    }
  }
  else
  {
    {
      loopCounter9 = 0;
      while (
         (DW96_Magnet.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, DW96_Magnet, 1);
        loopCounter9 = loopCounter9 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        intCurrentPosition_sample = ML_STAR.DWP96_Magnet.GetCurrentPosition();
        if (intCurrentPosition_sample > intEndPosition_sample_1)
        {
          MECC::TraceComment(Translate("loop break"));
          break;
        }
        if (
           (DW96_Magnet.GetCurrentPosition() > 0 && DW96_Magnet.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      DW96_Magnet.SetMax(DW96_Magnet.GetTotal());
      DW96_Magnet.SetCurrentPosition(1);
    }
    if (i != 0)
    {
      if(i==7){stringPipetteVariable="11111110";}
      if(i==6){stringPipetteVariable="11111100";}
      if(i==5){stringPipetteVariable="11111000";}
      if(i==4){stringPipetteVariable="11110000";}
      if(i==3){stringPipetteVariable="11100000";}
      if(i==2){stringPipetteVariable="11000000";}
      if(i==1){stringPipetteVariable="10000000";}
      {
        loopCounter9 = 0;
        while (
           (ML_STAR.DWP96_Magnet.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.DWP96_Magnet, 1);
          loopCounter9 = loopCounter9 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          intCurrentPosition_sample = ML_STAR.DWP96_Magnet.GetCurrentPosition();
          if (intCurrentPosition_sample > intEndPosition_sample_1)
          {
            MECC::TraceComment(Translate("loop break"));
            break;
          }
          if (
             (ML_STAR.DWP96_Magnet.GetCurrentPosition() > 0 && ML_STAR.DWP96_Magnet.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.DWP96_Magnet.SetMax(ML_STAR.DWP96_Magnet.GetTotal());
        ML_STAR.DWP96_Magnet.SetCurrentPosition(1);
      }
    }
  }
}
