#pragma once
#include "HslHamHeaterShakerLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLTipCountingLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLML_STARLib.hsl"
#include "SMTs\\Tip Present Check.hs_"
#include "HSLDevLib.hsl"
#include "SubMethodLib\\ErrorChannelSelection_v1.hs_"
#include "HSLMthLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLUtilLib2.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"
#include "HSLSTCCLib.hs_"

namespace EXTRACTION_STARLET_V6 {
  global variable Chk_Tip_Usage_1mL_zero;
  variable t_dev_deckLayoutFileName;
  sequence t_seq_refTipCarrier;
  sequence t_seq_refDispenseSeq;
  sequence t_seq_refAspirateSeq;
  variable Var_PipHandle;
  variable decapChPattern;
  event eventPipetteComplete;
  event eventAspirateComplete;
  event eventDecapComplete;
  event eventTipPickupComplete;
  variable Remain_Sample_Decap;
  variable Sample_Cnt_Decap;
  variable SimOn_Decap;
  variable Tip_Carrier_1mL_Decap;
  variable Tip_Carrier_300uL_Decap;
  variable loopCounter_Decap;
  variable ChannelError_Decapper[];
  variable Remain_Sample_Flag;
  variable ChannelSelection_decapError;
  function Check_Tips( device & subInstrument, sequence & seq_300ul_Tips, variable Sample_Cnt, variable Sample_Cnt_PRODUCT_001, variable Sample_Cnt_PRODUCT_002, variable Sample_Cnt_PRODUCT_003, variable Sample_Cnt_PRODUCT_004, variable Use_300ul_Tips, variable Random_Access, variable file2_Code, variable file2_PCR_Remain, variable file7_PCR_Remain, variable file9_PCR_Remain, variable file11_PCR_Remain, variable file2_Set_No, variable file2_PC_No, variable file2_WTC_No, variable file2_NC_No, variable file2_SD_No, variable file7_PC_No, variable file7_WTC_No, variable file7_NC_No, variable file7_SD_No, variable file9_PC_No, variable file9_WTC_No, variable file9_NC_No, variable file9_SD_No, variable file11_PC_No, variable file11_WTC_No, variable file11_NC_No, variable file11_SD_No, sequence & seq_All_Tips_Thinprep, variable Use_All_Tips_Thinprep, sequence & seq_All_Tips_Full, variable Use_All_Tips_Full, variable file1_SimOn, variable STEP, variable fileB_Thinprep, variable STARMag_Remain, variable Used_IC_No, variable StepChk_PKBead_Flag, variable StepChk_IC_Flag, variable StepChk_Bead_Flag, variable StepChk_Ctrdg_Flag, variable file2_Extraction_Kit ) void ;
  function Check_Tips_2( device & subInstrument, sequence & seq_300ul_Tips, variable Sample_Cnt, variable Sample_Cnt_PRODUCT_001, variable Sample_Cnt_PRODUCT_002, variable Sample_Cnt_PRODUCT_003, variable Sample_Cnt_PRODUCT_004, variable Use_300ul_Tips, variable Random_Access, variable file2_Code, variable file2_PCR_Remain, variable file7_PCR_Remain, variable file9_PCR_Remain, variable file11_PCR_Remain, variable file2_Set_No, variable file2_PC_No, variable file2_WTC_No, variable file2_NC_No, variable file2_SD_No, variable file7_PC_No, variable file7_WTC_No, variable file7_NC_No, variable file7_SD_No, variable file9_PC_No, variable file9_WTC_No, variable file9_NC_No, variable file9_SD_No, variable file11_PC_No, variable file11_WTC_No, variable file11_NC_No, variable file11_SD_No, sequence & seq_All_Tips_Thinprep, variable Use_All_Tips_Thinprep, sequence & seq_All_Tips_Full, variable Use_All_Tips_Full, variable file1_SimOn, variable STEP, variable fileB_Thinprep, variable STARMag_Remain, variable Used_IC_No, variable StepChk_PKBead_Flag, variable StepChk_IC_Flag, variable StepChk_Bead_Flag, variable StepChk_Ctrdg_Flag, variable file2_Extraction_Kit, sequence & seq_50ul_Tips, variable Use_50ul_Tips, variable file2_PPC_No, variable file7_PPC_No, variable file9_PPC_No, variable file11_PPC_No ) void ;
  function Check_Tips_Thinprep( device & subInstrument, sequence & seq_All_Tips_Part, sequence & seq_300ul_Tips, variable Sample_Cnt, variable Sample_Cnt_PRODUCT_001, variable Sample_Cnt_PRODUCT_002, variable Sample_Cnt_PRODUCT_003, variable Sample_Cnt_PRODUCT_004, variable Use_All_Tips_Part, variable Use_300ul_Tips, variable Random_Access, variable file2_Code, variable file2_PCR_Remain, variable file7_PCR_Remain, variable file9_PCR_Remain, variable file11_PCR_Remain, variable file2_Set_No, variable file2_PC_No, variable file2_WTC_No, variable file2_NC_No, variable file2_SD_No, variable file7_PC_No, variable file7_WTC_No, variable file7_NC_No, variable file7_SD_No, variable file9_PC_No, variable file9_WTC_No, variable file9_NC_No, variable file9_SD_No, variable file11_PC_No, variable file11_WTC_No, variable file11_NC_No, variable file11_SD_No, variable file1_SimOn, variable STEP, variable StepChk_Ctrdg_Flag ) void ;
  function DispAndWaste_Buffer( device & subInstrument, variable Sample_Cnt, variable Sample_Cnt_Ini, variable ChPattern_Chk, variable ChPattern_Remain, variable para_Asp_cLLD_On, sequence & para_Asp_position, sequence & para_Asp_position_2nd, variable para_Asp_Submerge_Depth, variable para_Asp_Bottom_Height, variable para_Asp_Retract_Distance, variable para_Asp_Premix_Vol, variable para_Asp_Premix_Cycle, variable para_Asp_Premix_ASD, sequence & para_Disp_position, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Liquid_Class, variable para_Liquid_Class_2, sequence & para_Tips, variable para_Volume, sequence & seq_Liquidwaste, variable file4_Step_Name, variable file4_Tip_Sequence, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep, variable para_Asp_ADC_On ) void ;
  function Disp_Bead( device & subInstrument, variable Sample_Cnt, sequence & para_Asp_position, sequence & para_Asp_position_2nd, variable para_Asp_Submerge_Depth, variable para_Asp_Premix_ASD, sequence & para_Disp_position, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Liquid_Class, sequence & para_Tips, variable para_Volume, variable STARMag_Remain, variable para_PreAliq_Volume, variable para_PreAliq_Bottom_Height, variable para_PreAliq_Retract_Distance, variable Tub_2_Remain, sequence & para_BB_Position, sequence & para_BB_Position_2nd, sequence & para_Bead_Position, sequence & para_Bead_Position_2nd, variable para_Liquid_Class_2, variable file4_Tip_Sequence, variable para_Liquid_Class_3, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep, variable file2_Product_No ) void ;
  function Disp_Buffer( device & subInstrument, variable Sample_Cnt, variable Sample_Cnt_Ini, variable ChPattern_Chk, variable ChPattern_Remain, variable ChPattern_Remain2, variable para_Asp_cLLD_On, sequence & para_Asp_position, variable para_Asp_Submerge_Depth, variable para_Asp_Bottom_Height, variable para_Asp_Retract_Distance, variable para_Asp_Premix_Vol, variable para_Asp_Premix_Cycle, variable para_Asp_Premix_ASD, variable para_Asp_ADC_On, variable para_Disp_cLLD_On, sequence & para_Disp_position, variable para_Disp_Submerge_Depth, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Disp_Postmix_Vol, variable para_Disp_Postmix_Cycle, variable para_Disp_Postmix_ASD, variable para_Liquid_Class, variable para_Liquid_Class_2, sequence & para_Tips, variable para_Volume, variable para_PreAliq_cLLD_On, variable para_PreAliq_Submerge_Depth, variable para_PreAliq_Bottom_Height, variable para_PreAliq_Retract_Distance, variable para_PreAliq_Volume, variable file4_Step_Name, variable file4_Tip_Sequence, sequence & para_Asp_position_2nd, variable STARMag_Remain, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep, variable ChPattern_Chk4, variable file2_Extraction_Kit, sequence seq_LB200_premix_1, sequence seq_LB200_premix_2 ) void ;
  function Disp_Buffer_2( device & subInstrument, variable Sample_Cnt, variable Sample_Cnt_Ini, variable ChPattern_Chk, variable ChPattern_Remain, variable ChPattern_Remain2, variable para_Asp_cLLD_On, sequence & para_Asp_position, variable para_Asp_Submerge_Depth, variable para_Asp_Bottom_Height, variable para_Asp_Retract_Distance, variable para_Asp_Premix_Vol, variable para_Asp_Premix_Cycle, variable para_Asp_Premix_ASD, variable para_Asp_ADC_On, variable para_Disp_cLLD_On, sequence & para_Disp_position, variable para_Disp_Submerge_Depth, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Disp_Postmix_Vol, variable para_Disp_Postmix_Cycle, variable para_Disp_Postmix_ASD, variable para_Liquid_Class, variable para_Liquid_Class_2, sequence & para_Tips, variable para_Volume, variable para_PreAliq_cLLD_On, variable para_PreAliq_Submerge_Depth, variable para_PreAliq_Bottom_Height, variable para_PreAliq_Retract_Distance, variable para_PreAliq_Volume, variable file4_Step_Name, variable file4_Tip_Sequence, sequence & para_Asp_position_2nd, variable STARMag_Remain, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep, variable ChPattern_Chk4, variable file2_Extraction_Kit ) void ;
  function Disp_IC( device & subInstrument, variable para_Asp_cLLD_On, variable para_Asp_Submerge_Depth, sequence & para_Asp_position, variable para_Asp_Bottom_Height, variable para_Asp_Retract_Distance, variable para_Asp_Premix_ASD, sequence & para_Disp_position, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Liquid_Class, sequence & para_Tips, variable para_Volume, variable para_PreAliq_Bottom_Height, variable para_PreAliq_Retract_Distance, variable para_PreAliq_Volume, variable file4_Disp_position, variable para_Disp_Submerge_Depth, variable para_PreAliq_Submerge_Depth, variable Channel_RSel, variable SeqGetTotal_para_Disp_position, variable file4_Tip_Sequence, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep, variable para_Disp_cLLD_on ) void ;
  function Disp_PKmix( device & subInstrument, variable Sample_Cnt, variable para_Liquid_Class, variable para_Liquid_Class_2, variable para_Liquid_Class_3, variable para_Volume, variable para_PreAliq_Volume, sequence & para_Tips, sequence & para_Asp_position, sequence & para_Asp_position_2nd, variable para_Asp_Submerge_Depth, variable para_PreAliq_Submerge_Depth, variable para_PreAliq_Bottom_Height, variable para_PreAliq_Retract_Distance, variable para_Asp_Premix_ASD, sequence & para_Disp_position, variable para_Disp_cLLD_On, variable para_Disp_Submerge_Depth, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable file4_Tip_Sequence, variable Tip_Carrier_1mL, variable Tip_Carrier_1mL_Thinprep, variable Tip_Carrier_300uL, variable file1_SimOn, variable file2_Extraction_Kit, variable file2_Product_No, variable STARMag_Remain, variable Tub_2_Remain ) void ;
  function Disp_Sample( device & subInstrument, variable Sample_Cnt, variable Sample_Cnt_Ini, variable ChPattern_Chk, variable ChPattern_Remain, variable ChPattern_Remain12, variable para_Asp_cLLD_On, sequence & para_Asp_position, variable para_Asp_Submerge_Depth, variable para_Asp_Bottom_Height, variable para_Asp_Retract_Distance, variable para_Asp_Premix_Vol, variable para_Asp_Premix_Cycle, variable para_Asp_Premix_ASD, variable para_Disp_cLLD_On, sequence & para_Disp_position, variable para_Disp_Submerge_Depth, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Disp_Postmix_Vol, variable para_Disp_Postmix_Cycle, variable para_Disp_Postmix_ASD, variable para_Liquid_Class, variable para_Liquid_Class_2, sequence & para_Tips, variable para_Volume, variable para_PreAliq_cLLD_On, variable para_PreAliq_Submerge_Depth, variable para_PreAliq_Bottom_Height, variable para_PreAliq_Retract_Distance, variable para_PreAliq_Volume, variable SimOn, sequence & seq_All_Samples, variable file2_Extraction_Kit, variable file2_Product_No, variable & Clot_Occurs, variable file4_Tip_Sequence, sequence Move_Channel_Sequence, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep, variable file2_Rack, variable SMP_CAR_32_001, variable SMP_CAR_32_002, variable SMP_CAR_32_003, variable SMP_CAR_24_001, variable SMP_CAR_24_002, variable SMP_CAR_24_003, variable SMP_CAR_24_004, variable SMP_CAR_12_Thinprep_001, variable SMP_CAR_12_Thinprep_002, variable SMP_CAR_12_Thinprep_003, variable SMP_CAR_12_Thinprep_004, variable SMP_CAR_12_Thinprep_005, variable SMP_CAR_12_Thinprep_006, variable SMP_CAR_12_Thinprep_007, variable SMP_CAR_12_Thinprep_008, sequence Seq_SampleRacks ) void ;
  function Disp_Sample_Decapper( device & subInstrument, device & subInstrument_Decapper, variable Sample_Cnt, variable Sample_Cnt_Ini, variable ChPattern_Chk, variable ChPattern_Remain, variable ChPattern_Remain12, variable para_Asp_cLLD_On, sequence & para_Asp_position, variable para_Asp_Submerge_Depth, variable para_Asp_Bottom_Height, variable para_Asp_Retract_Distance, variable para_Asp_Premix_Vol, variable para_Asp_Premix_Cycle, variable para_Asp_Premix_ASD, variable para_Disp_cLLD_On, sequence & para_Disp_position, variable para_Disp_Submerge_Depth, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Disp_Postmix_Vol, variable para_Disp_Postmix_Cycle, variable para_Disp_Postmix_ASD, variable para_Liquid_Class, variable para_Liquid_Class_2, sequence & para_Tips, variable para_Volume, variable para_PreAliq_cLLD_On, variable para_PreAliq_Submerge_Depth, variable para_PreAliq_Bottom_Height, variable para_PreAliq_Retract_Distance, variable para_PreAliq_Volume, variable SimOn, sequence & seq_All_Samples, variable file2_Extraction_Kit, variable file2_Product_No, variable & Clot_Occurs, variable file4_Tip_Sequence, sequence Move_Channel_Sequence, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep, variable file2_Rack, variable SMP_CAR_32_001, variable SMP_CAR_32_002, variable SMP_CAR_32_003, variable SMP_CAR_24_001, variable SMP_CAR_24_002, variable SMP_CAR_24_003, variable SMP_CAR_24_004, variable SMP_CAR_12_Thinprep_001, variable SMP_CAR_12_Thinprep_002, variable SMP_CAR_12_Thinprep_003, variable SMP_CAR_12_Thinprep_004, variable SMP_CAR_12_Thinprep_005, variable SMP_CAR_12_Thinprep_006, variable SMP_CAR_12_Thinprep_007, variable SMP_CAR_12_Thinprep_008, sequence Seq_SampleRacks, variable file2_Decapper, sequence para_Disp_position_remain ) void ;
  function Disp_Sample_Decapper_Pipetting( device & subInstrument, sequence & para_Asp_position, sequence & para_Disp_position, sequence & para_Tips ) void ;
  function Disp_Water( device & subInstrument, variable Sample_Cnt, variable Sample_Cnt_Ini, variable ChPattern_Chk, variable ChPattern_Remain, variable ChPattern_Remain2, variable para_Asp_cLLD_On, sequence & para_Asp_position, variable para_Asp_Submerge_Depth, variable para_Asp_Bottom_Height, variable para_Asp_Retract_Distance, variable para_Asp_Premix_Vol, variable para_Asp_Premix_Cycle, variable para_Asp_Premix_ASD, variable para_Asp_ADC_On, variable para_Disp_cLLD_On, sequence & para_Disp_position, variable para_Disp_Submerge_Depth, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Disp_Postmix_Vol, variable para_Disp_Postmix_Cycle, variable para_Disp_Postmix_ASD, variable para_Liquid_Class, variable para_Liquid_Class_2, sequence & para_Tips, variable para_Volume, variable para_PreAliq_cLLD_On, variable para_PreAliq_Submerge_Depth, variable para_PreAliq_Bottom_Height, variable para_PreAliq_Retract_Distance, variable para_PreAliq_Volume, variable file4_Step_Name, variable file4_Tip_Sequence, sequence & para_Asp_position_2nd, variable STARMag_Remain, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep, variable ChPattern_Chk4 ) void ;
  function HHS_Initialize( device & subInstrument, variable SimOn, variable & HHS1 ) void ;
  function Incubate( variable para_Incu_Time, variable para_Incu_Temp, variable para_Incu_Speed, variable SimOn, variable HHS1, device & subInstrument, variable Sample_Cnt, variable Sample_Cnt_Ini, variable ChPattern_Chk, variable ChPattern_Remain, variable ChPattern_Remain2, variable para_Asp_cLLD_On, sequence & para_Asp_position, variable para_Asp_Submerge_Depth, variable para_Asp_Bottom_Height, variable para_Asp_Retract_Distance, variable para_Asp_Premix_Vol, variable para_Asp_Premix_Cycle, variable para_Asp_Premix_ASD, variable para_Asp_ADC_On, variable para_Disp_cLLD_On, sequence & para_Disp_position, variable para_Disp_Submerge_Depth, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Disp_Postmix_Vol, variable para_Disp_Postmix_Cycle, variable para_Disp_Postmix_ASD, variable para_Liquid_Class, variable para_Liquid_Class_2, sequence & para_Tips, variable para_Volume, variable para_PreAliq_cLLD_On, variable para_PreAliq_Submerge_Depth, variable para_PreAliq_Bottom_Height, variable para_PreAliq_Retract_Distance, variable para_PreAliq_Volume, variable file4_Step_Name, variable file4_Tip_Sequence, sequence & para_Asp_position_2nd, variable STARMag_Remain, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep, variable ChPattern_Chk4 ) void ;
  function Move_DWP( device & subInstrument, sequence & Start_Location, sequence & Target_Location, variable SimOn, variable iSwap, sequence COREGripTool, variable Seegene_2Reagent50mLx6_1DWP_2PCR_R01_0001, variable Seegene_1HHS_1Magnet_1Tip_2Tube_R01_0001, variable HHS1 ) void ;
  function No_Tip_Error_Handling( device & subInstrument, variable file4_Tip_Sequence, sequence & para_Tips, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable Tip_Carrier_1mL_Thinprep, variable fileB_Thinprep, sequence & seq_All_Tips_Full, sequence & seq_All_Tips_Thinprep, sequence & seq_300ul_Tips, sequence & seq_All_Tips_Part ) void ;
  function Set_ChannelPattern( variable Sample_Cnt, variable & ChPattern_Chk, variable & ChPattern_Remain, variable file2_Extraction_Kit, variable file4_Step_Name, variable & ChPattern_Chk4, variable & ChPattern_Remain12, variable fileB_Thinprep ) void ;
  function Start_Temp_HHS( variable SimOn, variable HHS1, variable para_Incu_Temp ) void ;
  function Stop_Temp_HHS( variable SimOn, variable HHS1 ) void ;
  function WasteBuffer( device & subInstrument, variable Sample_Cnt, variable ChPattern_Chk, variable ChPattern_Remain, variable para_Asp_cLLD_On, sequence & para_Asp_position, variable para_Asp_Submerge_Depth, variable para_Asp_Bottom_Height, variable para_Asp_Retract_Distance, sequence & para_Disp_position, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Liquid_Class, sequence & para_Tips, variable para_Volume, variable file4_Tip_Sequence, variable para_Reuse_Tip, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep ) void ;
  function _executePipettingInParallel(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslFalse);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 1);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIP_PRESENT_CHECK::_InitLibrary();
    ERRORCHANNELSELECTION_V1::_InitLibrary();
  }
  function _ExitLibrary() {
    TIP_PRESENT_CHECK::_ExitLibrary();
    ERRORCHANNELSELECTION_V1::_ExitLibrary();
  }

  function Check_Tips( device & subInstrument, sequence & seq_300ul_Tips, variable Sample_Cnt, variable Sample_Cnt_PRODUCT_001, variable Sample_Cnt_PRODUCT_002, variable Sample_Cnt_PRODUCT_003, variable Sample_Cnt_PRODUCT_004, variable Use_300ul_Tips, variable Random_Access, variable file2_Code, variable file2_PCR_Remain, variable file7_PCR_Remain, variable file9_PCR_Remain, variable file11_PCR_Remain, variable file2_Set_No, variable file2_PC_No, variable file2_WTC_No, variable file2_NC_No, variable file2_SD_No, variable file7_PC_No, variable file7_WTC_No, variable file7_NC_No, variable file7_SD_No, variable file9_PC_No, variable file9_WTC_No, variable file9_NC_No, variable file9_SD_No, variable file11_PC_No, variable file11_WTC_No, variable file11_NC_No, variable file11_SD_No, sequence & seq_All_Tips_Thinprep, variable Use_All_Tips_Thinprep, sequence & seq_All_Tips_Full, variable Use_All_Tips_Full, variable file1_SimOn, variable STEP, variable fileB_Thinprep, variable STARMag_Remain, variable Used_IC_No, variable StepChk_PKBead_Flag, variable StepChk_IC_Flag, variable StepChk_Bead_Flag, variable StepChk_Ctrdg_Flag, variable file2_Extraction_Kit ) void {
    private variable TipsOnDeck_300;
    private variable file1_Sample_Cnt;
    private variable Tip_Usage_300ul;
    private variable loopCounter1;
    private variable file1_Tip_Sequence;
    private variable file1_Tip_Usage;
    private file file1;
    private variable file1_Enable;
    private variable Return_Value;
    private variable Build_Step_or_Not;
    private variable file1_Step_Name;
    private variable file1_No;
    private variable SamplePlusControl;
    private variable TipsOnDeck_Thinprep;
    private variable Tip_Usage_1ml_Thinprep;
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    private dialog dialogHandle_19;
    MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++\nVerify Number of Tips on Deck is Enough\n+++++++++++++++++++++++++++++++++"));
    MECC::TraceComment(Translate("******* Determine how many tips are required for this method *******"));
    MECC::TraceComment(Translate("******* Determine how many tips are on the deck *******"));
    SamplePlusControl = 0;
    file1_Sample_Cnt = StrIStr(Sample_Cnt);
    file1_Sample_Cnt = StrConcat2(Translate("_"), file1_Sample_Cnt);
    TipsOnDeck_New_Full = seq_All_Tips_Full.GetCount();
    TipsOnDeck_Thinprep = seq_All_Tips_Thinprep.GetCount();
    TipsOnDeck_300 = seq_300ul_Tips.GetCount();
    file1.AddField("Tip_Sequence", file1_Tip_Sequence, hslInteger);
    file1.AddField("Step_Name", file1_Step_Name, hslString, 255);
    file1.AddField(file1_Sample_Cnt, file1_Tip_Usage, hslInteger);
    file1.AddField("Enable", file1_Enable, hslString, 255);
    file1.AddField("No", file1_No, hslInteger);
    if( 0 == file1.Open("C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls" + " " + "'Reconstructed Method$'", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls", "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (file1_Tip_Sequence == 1)
        {
          Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + file1_Tip_Usage;
        }
        if (file1_Tip_Sequence == 2)
        {
          Tip_Usage_1ml_Thinprep = Tip_Usage_1ml_Thinprep + file1_Tip_Usage;
        }
        if (file1_Tip_Sequence == 3)
        {
          Tip_Usage_300ul = Tip_Usage_300ul + file1_Tip_Usage;
        }
        Build_Step_or_Not = StrFind(file1_Step_Name, Translate("Build"));
        if (Build_Step_or_Not != -1)
        {
          Return_Value = StrFind(file1_Enable, Translate("1st"));
          if (Return_Value != -1)
          {
            if (file1_No == 1)
            {
              SamplePlusControl = Sample_Cnt_PRODUCT_001 + file2_PC_No + file2_WTC_No + file2_NC_No + file2_SD_No;
              if (file2_PCR_Remain < SamplePlusControl)
              {
                Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + file1_Tip_Usage;
              }
            }
            if (file1_No == 2)
            {
              SamplePlusControl = Sample_Cnt_PRODUCT_002 + file7_PC_No + file7_WTC_No + file7_NC_No + file7_SD_No;
              if (file7_PCR_Remain < SamplePlusControl)
              {
                Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + file1_Tip_Usage;
              }
            }
            if (file1_No == 3)
            {
              SamplePlusControl = Sample_Cnt_PRODUCT_003 + file9_PC_No + file9_WTC_No + file9_NC_No + file9_SD_No;
              if (file9_PCR_Remain < SamplePlusControl)
              {
                Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + file1_Tip_Usage;
              }
            }
            if (file1_No == 4)
            {
              SamplePlusControl = Sample_Cnt_PRODUCT_004 + file11_PC_No + file11_WTC_No + file11_NC_No + file11_SD_No;
              if (file11_PCR_Remain < SamplePlusControl)
              {
                Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + file1_Tip_Usage;
              }
            }
          }
        }
        Return_Value = StrFind(file1_Enable, Translate("EnableICDispense1st"));
        if (Use_All_Tips_Thinprep > 0)
        {
          if (Return_Value != -1)
          {
            Tip_Usage_1ml_Thinprep = Tip_Usage_1ml_Thinprep - 1;
          }
        }
        else
        {
          if (Return_Value != -1)
          {
            if (Sample_Cnt <= 24)
            {
              Tip_Usage_300ul = Tip_Usage_300ul - 2;
            }
            else
            {
              Tip_Usage_300ul = Tip_Usage_300ul - 4;
            }
          }
        }
        Return_Value = StrFind(file1_Enable, Translate("EnableTransferSamples"));
        if (Return_Value != -1)
        {
          if (file1_No == 1)
          {
            Tip_Usage_300ul = Tip_Usage_300ul - Sample_Cnt + Sample_Cnt_PRODUCT_001;
          }
          if (file1_No == 2)
          {
            Tip_Usage_300ul = Tip_Usage_300ul - Sample_Cnt + Sample_Cnt_PRODUCT_002;
          }
          if (file1_No == 3)
          {
            Tip_Usage_300ul = Tip_Usage_300ul - Sample_Cnt + Sample_Cnt_PRODUCT_003;
          }
          if (file1_No == 4)
          {
            Tip_Usage_300ul = Tip_Usage_300ul - Sample_Cnt + Sample_Cnt_PRODUCT_004;
          }
        }
        Chk_Tip_Usage_1mL_zero = 0;
        if (Tip_Usage_1ml_Full > 0)
        {
          Chk_Tip_Usage_1mL_zero = 1;
        }
        if (Tip_Usage_300ul > 0)
        {
          Chk_Tip_Usage_1mL_zero = 1;
        }
        if (Tip_Usage_1ml_Thinprep > 0)
        {
          Chk_Tip_Usage_1mL_zero = 1;
        }
      }
    }
    if (file1_SimOn == 0)
    {
      if (STEP < 4)
      {
        if (STEP != 2)
        {
          if (Chk_Tip_Usage_1mL_zero != 0)
          {
            if (fileB_Thinprep == "true")
            {
              if (StepChk_Ctrdg_Flag > 0)
              {
                Tip_Usage_1ml_Thinprep = Tip_Usage_1ml_Thinprep + 1;
              }
            }
            else
            {
              if (StepChk_Ctrdg_Flag > 0)
              {
                Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 1;
              }
              if (Sample_Cnt > STARMag_Remain)
              {
                if (StepChk_PKBead_Flag > 0)
                {
                  if (StepChk_PKBead_Flag > 1)
                  {
                    Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 3;
                  }
                  else
                  {
                    Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 2;
                  }
                }
                if (StepChk_IC_Flag > 0)
                {
                  Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + Used_IC_No;
                }
              }
              else
              {
                if (StepChk_PKBead_Flag > 0)
                {
                  if (StepChk_PKBead_Flag > 1)
                  {
                    Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 2;
                  }
                  else
                  {
                    Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 1;
                  }
                }
                if (StepChk_IC_Flag > 0)
                {
                  Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + Used_IC_No;
                }
              }
            }
          }
          if (file2_Extraction_Kit == 11)
          {
            if (Sample_Cnt <= STARMag_Remain)
            {
              Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 4;
            }
            else
            {
              Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 8;
            }
          }
        }
      }
      if (STEP == 6)
      {
        if (Chk_Tip_Usage_1mL_zero != 0)
        {
          if (fileB_Thinprep == "true")
          {
            if (StepChk_Ctrdg_Flag > 0)
            {
              Tip_Usage_1ml_Thinprep = Tip_Usage_1ml_Thinprep + 1;
            }
          }
          else
          {
            if (StepChk_Ctrdg_Flag > 0)
            {
              Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 1;
            }
            if (Sample_Cnt > STARMag_Remain)
            {
              if (StepChk_Bead_Flag > 0)
              {
                if (StepChk_PKBead_Flag > 0)
                {
                  if (StepChk_PKBead_Flag > 1)
                  {
                    Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 3;
                  }
                  else
                  {
                    Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 2;
                  }
                }
              }
              if (StepChk_IC_Flag > 0)
              {
                Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + Used_IC_No;
              }
            }
            else
            {
              if (StepChk_Bead_Flag > 0)
              {
                if (StepChk_PKBead_Flag > 0)
                {
                  if (StepChk_PKBead_Flag > 1)
                  {
                    Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 2;
                  }
                  else
                  {
                    Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 1;
                  }
                }
              }
              if (StepChk_IC_Flag > 0)
              {
                Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + Used_IC_No;
              }
            }
          }
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    if (Use_All_Tips_Thinprep > 0)
    {
      dialogHandle_2.SetOutput(Translate("1 ml_Thinprep Tips Required : "), Tip_Usage_1ml_Thinprep, Translate("  /  Current Tips Remaining : "), TipsOnDeck_Thinprep, "\n");
      dialogHandle_2.ShowOutput(Translate("Required Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    else
    {
      if (Use_All_Tips_Full > 0)
      {
        if (Use_300ul_Tips > 0)
        {
          dialogHandle_3.SetOutput(Translate("1 ml Tips Required : "), Tip_Usage_1ml_Full, Translate("  /  Current Tips Remaining : "), TipsOnDeck_New_Full, "\n", Translate("300 ul Tips Required : "), Tip_Usage_300ul, Translate("  /  Current Tips Remaining : "), TipsOnDeck_300, "\n");
          dialogHandle_3.ShowOutput(Translate("Required Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
        else
        {
          dialogHandle_4.SetOutput(Translate("1 ml Tips Required : "), Tip_Usage_1ml_Full, Translate("  /  Current Tips Remaining : "), TipsOnDeck_New_Full, "\n");
          dialogHandle_4.ShowOutput(Translate("Required Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
      }
      else
      {
        if (Use_300ul_Tips > 0)
        {
          dialogHandle_1.SetOutput(Translate("300 ul Tips Required : "), Tip_Usage_300ul, Translate("  /  Current Tips Remaining : "), TipsOnDeck_300, "\n");
          dialogHandle_1.ShowOutput(Translate("Required Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
      }
    }
    if (Use_All_Tips_Full > 0)
    {
      if (Tip_Usage_1ml_Full <= 672)
      {
        if (TipsOnDeck_New_Full < Tip_Usage_1ml_Full)
        {
          dialogHandle_14.SetOutput(Translate("There are not enough tips on the deck."), Translate(""), "\n", Translate("To process "), Sample_Cnt, Translate(" samples, you will need "), Tip_Usage_1ml_Full, Translate("ea 1000ul tips in the Tip Carrier."), "\n", Translate("Please add more tips and press 'OK' button to restart the method."));
          dialogHandle_14.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          TipCount::Edit2(seq_All_Tips_Full, Translate("All_Tips_Full_Counter"), subInstrument, 999);
          TipsOnDeck_New_Full = seq_All_Tips_Full.GetCount();
          Trace ("TipsOnDeck_New_Full = ", TipsOnDeck_New_Full);
          if (TipsOnDeck_New_Full < Tip_Usage_1ml_Full)
          {
            dialogHandle_12.SetOutput(Translate("There are not enough tips on the deck."), Translate("Method will abort."));
            if( 0 == dialogHandle_12.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_12.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_12.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
      }
      else
      {
        if (TipsOnDeck_New_Full < Tip_Usage_1ml_Full)
        {
          dialogHandle_11.SetOutput(Translate("There are not enough 1 mL tips on the deck to ensure the current operation is completely performed."), "\n", Translate("Please add more 1 mL tips, when the instrument is stopped and alarmed."));
          dialogHandle_11.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        }
      }
    }
    if (Use_All_Tips_Thinprep > 0)
    {
      if (Tip_Usage_1ml_Thinprep <= 96)
      {
        if (TipsOnDeck_Thinprep < Tip_Usage_1ml_Thinprep)
        {
          dialogHandle_19.SetOutput(Translate("There are not enough tips on the deck."), Translate(""), "\n", Translate("To process "), Sample_Cnt, Translate(" samples, you will need "), Tip_Usage_1ml_Thinprep, Translate("ea 1000ul tips in the Tip Carrier."), "\n", Translate("Please add more tips and press 'OK' button to restart the method."));
          dialogHandle_19.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          TipCount::Edit2(seq_All_Tips_Thinprep, Translate("All_Tips_Thinprep_Counter"), subInstrument, 999);
          TipsOnDeck_Thinprep = seq_All_Tips_Thinprep.GetCount();
          Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
          if (TipsOnDeck_Thinprep < Tip_Usage_1ml_Thinprep)
          {
            dialogHandle_16.SetOutput(Translate("There are not enough tips on the deck."), Translate("Method will abort."));
            if( 0 == dialogHandle_16.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_16.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_16.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
      }
      else
      {
        if (TipsOnDeck_Thinprep < Tip_Usage_1ml_Thinprep)
        {
          dialogHandle_13.SetOutput(Translate("There are not enough 1 mL tips_Thinprep on the deck to ensure the current operation is completely performed."), "\n", Translate("Please add more 1 mL tips_Thinprep, when the instrument is stopped and alarmed."));
          dialogHandle_13.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        }
      }
    }
    if (Use_300ul_Tips > 0)
    {
      if (Tip_Usage_300ul <= 384)
      {
        if (TipsOnDeck_300 < Tip_Usage_300ul)
        {
          dialogHandle_18.SetOutput(Translate("There are not enough tips on the deck."), Translate(""), "\n", Translate("To process "), Sample_Cnt, Translate(" samples, you will need "), Tip_Usage_300ul, Translate("ea 300ul tips in the Tip Carrier."), "\n", Translate("Please add more tips and press 'OK' button to restart the method."));
          dialogHandle_18.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          TipCount::Edit2(seq_300ul_Tips, Translate("All_300ul_Tips_Counter"), subInstrument, 999);
          TipsOnDeck_300 = seq_300ul_Tips.GetCount();
          Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
          if (TipsOnDeck_300 < Tip_Usage_300ul)
          {
            dialogHandle_17.SetOutput(Translate("There are not enough tips on the deck."), Translate("Method will abort."));
            if( 0 == dialogHandle_17.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_17.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_17.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
      }
      else
      {
        if (TipsOnDeck_300 < Tip_Usage_300ul)
        {
          dialogHandle_15.SetOutput(Translate("There are not enough 300 uL tips on the deck to ensure the current operation is completely performed."), "\n", Translate("Please add more 300 uL tips, when the instrument is stopped and alarmed."));
          dialogHandle_15.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        }
      }
    }
    if (Sample_Cnt_PRODUCT_002 == 0)
    {
      if (Use_All_Tips_Full > 0)
      {
        if (TipsOnDeck_New_Full < Tip_Usage_1ml_Full)
        {
          dialogHandle_9.SetOutput(Translate("There are not enough tips on the deck."), Translate(""), "\n", Translate("To process "), Sample_Cnt, Translate(" samples, you will need "), Tip_Usage_1ml_Full, Translate("ea 1000ul tips in the Tip Carrier."), "\n", Translate("Please add more tips and press 'OK' button to restart the method."));
          dialogHandle_9.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          TipCount::Edit2(seq_All_Tips_Full, Translate("All_Tips_Full_Counter"), subInstrument, 999);
          TipsOnDeck_New_Full = seq_All_Tips_Full.GetCount();
          Trace ("TipsOnDeck_New_Full = ", TipsOnDeck_New_Full);
          if (TipsOnDeck_New_Full < Tip_Usage_1ml_Full)
          {
            dialogHandle_7.SetOutput(Translate("There are not enough tips on the deck."), Translate("Method will abort."));
            if( 0 == dialogHandle_7.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_7.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_7.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
      }
      if (Use_All_Tips_Thinprep > 0)
      {
        if (TipsOnDeck_Thinprep < Tip_Usage_1ml_Thinprep)
        {
          dialogHandle_10.SetOutput(Translate("There are not enough tips on the deck."), Translate(""), "\n", Translate("To process "), Sample_Cnt, Translate(" samples, you will need "), Tip_Usage_1ml_Thinprep, Translate("ea 1000ul tips in the Tip Carrier."), "\n", Translate("Please add more tips and press 'OK' button to restart the method."));
          dialogHandle_10.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          TipCount::Edit2(seq_All_Tips_Thinprep, Translate("All_1000ul_Thinprep_Tips_Counter"), subInstrument, 999);
          TipsOnDeck_Thinprep = seq_All_Tips_Thinprep.GetCount();
          Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
          if (TipsOnDeck_Thinprep < Tip_Usage_1ml_Thinprep)
          {
            dialogHandle_6.SetOutput(Translate("There are not enough tips on the deck."), Translate("Method will abort."));
            if( 0 == dialogHandle_6.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_6.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_6.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
      }
      if (Use_300ul_Tips > 0)
      {
        if (TipsOnDeck_300 < Tip_Usage_300ul)
        {
          dialogHandle_8.SetOutput(Translate("There are not enough tips on the deck."), Translate(""), "\n", Translate("To process "), Sample_Cnt, Translate(" samples, you will need "), Tip_Usage_300ul, Translate("ea 300ul tips in the Tip Carrier."), "\n", Translate("Please add more tips and press 'OK' button to restart the method."));
          dialogHandle_8.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          TipCount::Edit2(seq_300ul_Tips, Translate("All_300ul_Tips_Counter"), subInstrument, 999);
          TipsOnDeck_300 = seq_300ul_Tips.GetCount();
          Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
          if (TipsOnDeck_300 < Tip_Usage_300ul)
          {
            dialogHandle_5.SetOutput(Translate("There are not enough tips on the deck."), Translate("Method will abort."));
            if( 0 == dialogHandle_5.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_5.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_5.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
      }
    }
  }

  function Set_ChannelPattern( variable Sample_Cnt, variable & ChPattern_Chk, variable & ChPattern_Remain, variable file2_Extraction_Kit, variable file4_Step_Name, variable & ChPattern_Chk4, variable & ChPattern_Remain12, variable fileB_Thinprep ) void {
    private variable WellsInLastColumn;
    private variable WellsInLastColumn_Thinprep;
    ChPattern_Chk = 0;
    ChPattern_Remain = 0;
    ChPattern_Chk4 = 0;
    ChPattern_Remain12 = 0;
    MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++\nDefine Channel Patterns based on Number of Samples\n+++++++++++++++++++++++++++++++++++++++++++++"));
    if (Sample_Cnt == 1)
    {
      ChPattern_Chk = Translate("10000000");
      ChPattern_Chk4 = Translate("10000000");
    }
    if (Sample_Cnt == 2)
    {
      ChPattern_Chk = Translate("11000000");
      ChPattern_Chk4 = Translate("11000000");
    }
    if (Sample_Cnt == 3)
    {
      ChPattern_Chk = Translate("11100000");
      ChPattern_Chk4 = Translate("11100000");
    }
    if (Sample_Cnt == 4)
    {
      ChPattern_Chk = Translate("11110000");
      ChPattern_Chk4 = Translate("11110000");
    }
    if (Sample_Cnt == 5)
    {
      ChPattern_Chk = Translate("11111000");
      ChPattern_Chk4 = Translate("11110000");
    }
    if (Sample_Cnt == 6)
    {
      ChPattern_Chk = Translate("11111100");
      ChPattern_Chk4 = Translate("11110000");
    }
    if (Sample_Cnt == 7)
    {
      ChPattern_Chk = Translate("11111110");
      ChPattern_Chk4 = Translate("11110000");
    }
    if (Sample_Cnt > 7)
    {
      ChPattern_Chk = Translate("11111111");
      ChPattern_Chk4 = Translate("11110000");
    }
    Trace ("Channel Pattern for Standard Operation:  ", ChPattern_Chk);
    WellsInLastColumn = Sample_Cnt % 8;
    if (WellsInLastColumn == 1)
    {
      ChPattern_Remain = Translate("10000000");
    }
    if (WellsInLastColumn == 2)
    {
      ChPattern_Remain = Translate("11000000");
    }
    if (WellsInLastColumn == 3)
    {
      ChPattern_Remain = Translate("11100000");
    }
    if (WellsInLastColumn == 4)
    {
      ChPattern_Remain = Translate("11110000");
    }
    if (WellsInLastColumn == 5)
    {
      ChPattern_Remain = Translate("11111000");
    }
    if (WellsInLastColumn == 6)
    {
      ChPattern_Remain = Translate("11111100");
    }
    if (WellsInLastColumn == 7)
    {
      ChPattern_Remain = Translate("11111110");
    }
    Trace ("Channel Pattern for Remaining Wells:  ", ChPattern_Remain);
    WellsInLastColumn_Thinprep = Sample_Cnt % 12;
    WellsInLastColumn_Thinprep = WellsInLastColumn_Thinprep % 8;
    if (WellsInLastColumn_Thinprep == 1)
    {
      ChPattern_Remain12 = Translate("10000000");
    }
    if (WellsInLastColumn_Thinprep == 2)
    {
      ChPattern_Remain12 = Translate("11000000");
    }
    if (WellsInLastColumn_Thinprep == 3)
    {
      ChPattern_Remain12 = Translate("11100000");
    }
    if (WellsInLastColumn_Thinprep == 4)
    {
      ChPattern_Remain12 = Translate("11110000");
    }
    if (WellsInLastColumn_Thinprep == 5)
    {
      ChPattern_Remain12 = Translate("11111000");
    }
    if (WellsInLastColumn_Thinprep == 6)
    {
      ChPattern_Remain12 = Translate("11111100");
    }
    if (WellsInLastColumn_Thinprep == 7)
    {
      ChPattern_Remain12 = Translate("11111110");
    }
    if (fileB_Thinprep == "true")
    {
      Trace ("Channel Pattern_Thinprep for Remaining Wells:  ", ChPattern_Remain12);
    }
    MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++\nDefine Channel Patterns based on Number of Samples - Submethod Complete\n+++++++++++++++++++++++++++++++++++++++++++++"));
  }

  function HHS_Initialize( device & subInstrument, variable SimOn, variable & HHS1 ) void {
    private variable Error_HHS1;
    private variable Answer_HHS;
    private dialog dialogHandle_20;
    private dialog dialogHandle_21;
    HHS1 = 0;
    if (SimOn == 0)
    {
      Error_HHS1 = HSLHamHeaterShaker::CreateStarDevice(subInstrument, 1, HHS1);
      if (Error_HHS1 != 0)
      {
        dialogHandle_21.SetOutput(Translate("Hamilton Heater/Shaker is not communicating."), "\n", Translate("Click OK to Abort.  Turn off the STARlet and check the USB cable."), "\n", Translate(""), "\n", Translate("Error code = "), Error_HHS1);
        if( 0 == dialogHandle_21.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
        {
              MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Answer_HHS = dialogHandle_21.ShowOutput(Translate("Warning:  Communication Problem with the Hamilton Heater Shaker(s)"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
        if( 0 == dialogHandle_21.PlaySound("") )
        {
              MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        abort;
      }
      HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
      HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
    }
  }

  function Start_Temp_HHS( variable SimOn, variable HHS1, variable para_Incu_Temp ) void {
    if (SimOn == 0)
    {
      HSLHamHeaterShaker::StartTempCtrl(HHS1, para_Incu_Temp, 0);
    }
  }

  function Stop_Temp_HHS( variable SimOn, variable HHS1 ) void {
    if (SimOn == 0)
    {
      HSLHamHeaterShaker::StopTempCtrl(HHS1);
    }
  }

  function Disp_Sample( device & subInstrument, variable Sample_Cnt, variable Sample_Cnt_Ini, variable ChPattern_Chk, variable ChPattern_Remain, variable ChPattern_Remain12, variable para_Asp_cLLD_On, sequence & para_Asp_position, variable para_Asp_Submerge_Depth, variable para_Asp_Bottom_Height, variable para_Asp_Retract_Distance, variable para_Asp_Premix_Vol, variable para_Asp_Premix_Cycle, variable para_Asp_Premix_ASD, variable para_Disp_cLLD_On, sequence & para_Disp_position, variable para_Disp_Submerge_Depth, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Disp_Postmix_Vol, variable para_Disp_Postmix_Cycle, variable para_Disp_Postmix_ASD, variable para_Liquid_Class, variable para_Liquid_Class_2, sequence & para_Tips, variable para_Volume, variable para_PreAliq_cLLD_On, variable para_PreAliq_Submerge_Depth, variable para_PreAliq_Bottom_Height, variable para_PreAliq_Retract_Distance, variable para_PreAliq_Volume, variable SimOn, sequence & seq_All_Samples, variable file2_Extraction_Kit, variable file2_Product_No, variable & Clot_Occurs, variable file4_Tip_Sequence, sequence Move_Channel_Sequence, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep, variable file2_Rack, variable SMP_CAR_32_001, variable SMP_CAR_32_002, variable SMP_CAR_32_003, variable SMP_CAR_24_001, variable SMP_CAR_24_002, variable SMP_CAR_24_003, variable SMP_CAR_24_004, variable SMP_CAR_12_Thinprep_001, variable SMP_CAR_12_Thinprep_002, variable SMP_CAR_12_Thinprep_003, variable SMP_CAR_12_Thinprep_004, variable SMP_CAR_12_Thinprep_005, variable SMP_CAR_12_Thinprep_006, variable SMP_CAR_12_Thinprep_007, variable SMP_CAR_12_Thinprep_008, sequence Seq_SampleRacks ) void {
    private variable Remain_Sample;
    private variable LoopCnt;
    private variable ChannelSelection_NotError;
    private variable numOfChannels;
    private variable PresentTipNo;
    private variable isTipThere;
    private variable channelIndex;
    private variable firmwareReturn;
    private variable firmwareCommand;
    private variable CurSmpPos;
    private variable ChannelSelection_NotEnoughLiquidPresent;
    private variable ChannelSelection_AllError;
    private variable ChannelSelection_LiquidNotCorrectlyAspirated;
    private variable ChannelSelection_ClotDetected;
    private variable CurDWP96;
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    private variable ChannelSelection_nonError;
    Clot_Occurs = 0;
    No_Tip_Error_Flag = 0;
    ChannelSelection_nonError = Translate("00000000");
    MECC::TraceComment(Translate("********************* Add Samples to 96 DWP  *********************"));
    ChannelError.SetSize(0);
    if (para_Volume <= 50)
    {
      LoopCnt = Sample_Cnt / 8;
      Remain_Sample = Sample_Cnt % 8;
      {
        for(loopCounter1 = 0; loopCounter1 < LoopCnt;)
        {
          loopCounter1 = loopCounter1 + 1;
          {
            loopCounter55 = 0;
            while (No_Tip_Error_Flag == 0)
            {
              loopCounter55 = loopCounter55 + 1;
              onerror goto errLabel_22 ;
              err.Clear();
              subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (file1_SimOn == 0)
              {
                TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                if (ChPatternAbort == "11111111")
                {
                  No_Tip_Error_Flag = 1;
                }
                else
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }
              }
              else
              {
                No_Tip_Error_Flag = 1;
              }
              errLabel_22 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }   /* end if from skip handler if no error */
            }
          }
          No_Tip_Error_Flag = 0;
          if (SimOn == 0)
          {
            ChannelSelection_NotError = Translate("");
            PresentTipNo = 0;
            numOfChannels = DevGetCfgValueWithKey(subInstrument, 1);
            {
              for(channelIndex = 0; channelIndex < numOfChannels;)
              {
                channelIndex = channelIndex + 1;
                firmwareCommand = StrConcat4(Translate("P"), channelIndex, Translate("RW"), Translate(""));
                {
                  	variable arrRetValues[];
                  	arrRetValues = subInstrument._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
                  	firmwareReturn = arrRetValues[3];
                }
                isTipThere = StrMid(firmwareReturn, 5, 1);
                if (isTipThere == "1")
                {
                  PresentTipNo = PresentTipNo + 1;
                }
                ChannelSelection_NotError = StrConcat2(ChannelSelection_NotError, isTipThere);
              }
            }
          }
          else
          {
            ChannelSelection_NotError = Translate("11111111");
            PresentTipNo = 8;
          }
          CurSmpPos = para_Asp_position.GetCurrentPosition();
          CurDWP96 = para_Disp_position.GetCurrentPosition();
          MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
          Trace ("loopCounter of LoopCnt= ",loopCounter1);
          Trace ("Current Sample Position = ",CurSmpPos);
          Trace ("Current DWP96 Position = ",CurDWP96);
          MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
          onerror goto errLabel_23 ;
          err.Clear();
          MECC::TraceComment(Translate("+++++++++++++++++++++++++++++ 1st Aspiration ++++++++++++++++++++++++++++++++"));
          if (para_Asp_cLLD_On == 0)
          {
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          else
          {
            if (para_Volume == 15)
            {
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
            else
            {
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
          }
          ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_nonError);
          errLabel_23 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_nonError);
            para_Asp_position.SetCurrentPosition(CurSmpPos);
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            Clot_Occurs = 1;
            ChannelError_1st = StrMid(ChannelSelection_AllError, 0, 1);
            ChannelError_2nd = StrMid(ChannelSelection_AllError, 1, 1);
            ChannelError_3rd = StrMid(ChannelSelection_AllError, 2, 1);
            ChannelError_4th = StrMid(ChannelSelection_AllError, 3, 1);
            ChannelError_5th = StrMid(ChannelSelection_AllError, 4, 1);
            ChannelError_6th = StrMid(ChannelSelection_AllError, 5, 1);
            ChannelError_7th = StrMid(ChannelSelection_AllError, 6, 1);
            ChannelError_8th = StrMid(ChannelSelection_AllError, 7, 1);
          }   /* end if from skip handler if no error */
          if (ChannelSelection_NotError != "00000000")
          {
            if (ChannelSelection_NotError == "11111111")
            {
              ChannelError_1st = 0;
              ChannelError_2nd = 0;
              ChannelError_3rd = 0;
              ChannelError_4th = 0;
              ChannelError_5th = 0;
              ChannelError_6th = 0;
              ChannelError_7th = 0;
              ChannelError_8th = 0;
            }
            if (para_Disp_cLLD_On == 0)
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            else
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            CurSmpPos = CurSmpPos + PresentTipNo;
            para_Asp_position.SetCurrentPosition(CurSmpPos);
          }
          else
          {
            subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            CurSmpPos = CurSmpPos + PresentTipNo;
            para_Asp_position.SetCurrentPosition(CurSmpPos);
          }
          CurDWP96 = CurDWP96 + PresentTipNo;
          CurMovementPos = CurMovementPos + PresentTipNo;
          para_Disp_position.SetCurrentPosition(CurDWP96);
          Move_Channel_Sequence.SetCurrentPosition(CurMovementPos);
          ChannelError.AddAsLast(ChannelError_1st);
          ChannelError.AddAsLast(ChannelError_2nd);
          ChannelError.AddAsLast(ChannelError_3rd);
          ChannelError.AddAsLast(ChannelError_4th);
          ChannelError.AddAsLast(ChannelError_5th);
          ChannelError.AddAsLast(ChannelError_6th);
          ChannelError.AddAsLast(ChannelError_7th);
          ChannelError.AddAsLast(ChannelError_8th);
        }
      }
      if (Remain_Sample > 0)
      {
        {
          loopCounter55 = 0;
          while (No_Tip_Error_Flag == 0)
          {
            loopCounter55 = loopCounter55 + 1;
            onerror goto errLabel_24 ;
            err.Clear();
            subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            if (file1_SimOn == 0)
            {
              TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
              if (ChPatternAbort == ChPattern_Remain)
              {
                No_Tip_Error_Flag = 1;
              }
              else
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }
            }
            else
            {
              No_Tip_Error_Flag = 1;
            }
            errLabel_24 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
            }   /* end if from skip handler if no error */
          }
        }
        No_Tip_Error_Flag = 0;
        if (SimOn == 0)
        {
          ChannelSelection_NotError = Translate("");
          PresentTipNo = 0;
          numOfChannels = DevGetCfgValueWithKey(subInstrument, 1);
          {
            for(channelIndex = 0; channelIndex < numOfChannels;)
            {
              channelIndex = channelIndex + 1;
              firmwareCommand = StrConcat4(Translate("P"), channelIndex, Translate("RW"), Translate(""));
              {
                	variable arrRetValues[];
                	arrRetValues = subInstrument._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
                	firmwareReturn = arrRetValues[3];
              }
              isTipThere = StrMid(firmwareReturn, 5, 1);
              if (isTipThere == "1")
              {
                PresentTipNo = PresentTipNo + 1;
              }
              ChannelSelection_NotError = StrConcat2(ChannelSelection_NotError, isTipThere);
            }
          }
        }
        else
        {
          ChannelSelection_NotError = ChPattern_Remain;
          PresentTipNo = 8;
        }
        ChannelError_use = ChannelSelection_NotError;
        ChannelError_use = StrFVal(ChannelError_use);
        ChannelError_use = MthCeiling(ChannelError_use);
        ChannelError_No = ChannelError_use % 10000000;
        CurSmpPos = para_Asp_position.GetCurrentPosition();
        CurDWP96 = para_Disp_position.GetCurrentPosition();
        MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
        Trace ("loopCounter of LoopCnt= ",loopCounter1 + 1);
        Trace ("Current Sample Position = ",CurSmpPos);
        Trace ("Current DWP96 Position = ",CurDWP96);
        MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
        onerror goto errLabel_25 ;
        err.Clear();
        MECC::TraceComment(Translate("+++++++++++++++++++++++++++++ 1st Aspiration ++++++++++++++++++++++++++++++++"));
        if (para_Asp_cLLD_On == 0)
        {
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          if (para_Volume == 15)
          {
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          else
          {
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
        }
        ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_nonError);
        errLabel_25 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_nonError);
          para_Asp_position.SetCurrentPosition(CurSmpPos);
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          Clot_Occurs = 1;
          ChannelError_1st = StrMid(ChannelSelection_AllError, 0, 1);
          ChannelError_2nd = StrMid(ChannelSelection_AllError, 1, 1);
          ChannelError_3rd = StrMid(ChannelSelection_AllError, 2, 1);
          ChannelError_4th = StrMid(ChannelSelection_AllError, 3, 1);
          ChannelError_5th = StrMid(ChannelSelection_AllError, 4, 1);
          ChannelError_6th = StrMid(ChannelSelection_AllError, 5, 1);
          ChannelError_7th = StrMid(ChannelSelection_AllError, 6, 1);
          ChannelError_8th = StrMid(ChannelSelection_AllError, 7, 1);
        }   /* end if from skip handler if no error */
        if (ChannelSelection_NotError != "00000000")
        {
          if (ChannelSelection_NotError == ChannelSelection_AllCh)
          {
            ChannelError_1st = 0;
            ChannelError_2nd = 0;
            ChannelError_3rd = 0;
            ChannelError_4th = 0;
            ChannelError_5th = 0;
            ChannelError_6th = 0;
            ChannelError_7th = 0;
            ChannelError_8th = 0;
          }
          if (para_Disp_cLLD_On == 0)
          {
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
          else
          {
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
          subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          CurSmpPos = CurSmpPos + PresentTipNo;
          para_Asp_position.SetCurrentPosition(CurSmpPos);
        }
        else
        {
          subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          CurSmpPos = CurSmpPos + PresentTipNo;
          para_Asp_position.SetCurrentPosition(CurSmpPos);
        }
        CurDWP96 = CurDWP96 + PresentTipNo;
        CurMovementPos = CurMovementPos + PresentTipNo;
        para_Disp_position.SetCurrentPosition(CurDWP96);
        Move_Channel_Sequence.SetCurrentPosition(CurMovementPos);
        if (ChannelError_No == 0)
        {
          ChannelError.AddAsLast(ChannelError_1st);
        }
        if (ChannelError_No == 1000000)
        {
          ChannelError.AddAsLast(ChannelError_1st);
          ChannelError.AddAsLast(ChannelError_2nd);
        }
        if (ChannelError_No == 1100000)
        {
          ChannelError.AddAsLast(ChannelError_1st);
          ChannelError.AddAsLast(ChannelError_2nd);
          ChannelError.AddAsLast(ChannelError_3rd);
        }
        if (ChannelError_No == 1110000)
        {
          ChannelError.AddAsLast(ChannelError_1st);
          ChannelError.AddAsLast(ChannelError_2nd);
          ChannelError.AddAsLast(ChannelError_3rd);
          ChannelError.AddAsLast(ChannelError_4th);
        }
        if (ChannelError_No == 1111000)
        {
          ChannelError.AddAsLast(ChannelError_1st);
          ChannelError.AddAsLast(ChannelError_2nd);
          ChannelError.AddAsLast(ChannelError_3rd);
          ChannelError.AddAsLast(ChannelError_4th);
          ChannelError.AddAsLast(ChannelError_5th);
        }
        if (ChannelError_No == 1111100)
        {
          ChannelError.AddAsLast(ChannelError_1st);
          ChannelError.AddAsLast(ChannelError_2nd);
          ChannelError.AddAsLast(ChannelError_3rd);
          ChannelError.AddAsLast(ChannelError_4th);
          ChannelError.AddAsLast(ChannelError_5th);
          ChannelError.AddAsLast(ChannelError_6th);
        }
        if (ChannelError_No == 1111110)
        {
          ChannelError.AddAsLast(ChannelError_1st);
          ChannelError.AddAsLast(ChannelError_2nd);
          ChannelError.AddAsLast(ChannelError_3rd);
          ChannelError.AddAsLast(ChannelError_4th);
          ChannelError.AddAsLast(ChannelError_5th);
          ChannelError.AddAsLast(ChannelError_6th);
          ChannelError.AddAsLast(ChannelError_7th);
        }
      }
    }
    else
    {
      if (file4_Tip_Sequence == 2)
      {
        LoopCnt = Sample_Cnt / 12;
        Remain_Sample = Sample_Cnt % 12;
        Re_LoopCnt = Remain_Sample / 8;
        Re_Remain_Sample = Remain_Sample % 8;
        {
          for(loopCounter1 = 0; loopCounter1 < LoopCnt;)
          {
            loopCounter1 = loopCounter1 + 1;
            {
              loopCounter55 = 0;
              while (No_Tip_Error_Flag == 0)
              {
                loopCounter55 = loopCounter55 + 1;
                onerror goto errLabel_26 ;
                err.Clear();
                subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                if (file1_SimOn == 0)
                {
                  TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                  if (ChPatternAbort == "11111111")
                  {
                    No_Tip_Error_Flag = 1;
                  }
                  else
                  {
                    No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                  }
                }
                else
                {
                  No_Tip_Error_Flag = 1;
                }
                errLabel_26 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }   /* end if from skip handler if no error */
              }
            }
            No_Tip_Error_Flag = 0;
            if (SimOn == 0)
            {
              ChannelSelection_NotError = Translate("");
              PresentTipNo = 0;
              numOfChannels = DevGetCfgValueWithKey(subInstrument, 1);
              {
                for(channelIndex = 0; channelIndex < numOfChannels;)
                {
                  channelIndex = channelIndex + 1;
                  firmwareCommand = StrConcat4(Translate("P"), channelIndex, Translate("RW"), Translate(""));
                  {
                    	variable arrRetValues[];
                    	arrRetValues = subInstrument._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
                    	firmwareReturn = arrRetValues[3];
                  }
                  isTipThere = StrMid(firmwareReturn, 5, 1);
                  if (isTipThere == "1")
                  {
                    PresentTipNo = PresentTipNo + 1;
                  }
                  ChannelSelection_NotError = StrConcat2(ChannelSelection_NotError, isTipThere);
                }
              }
            }
            else
            {
              ChannelSelection_NotError = Translate("11111111");
              PresentTipNo = 8;
            }
            CurSmpPos = para_Asp_position.GetCurrentPosition();
            CurDWP96 = para_Disp_position.GetCurrentPosition();
            MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
            Trace ("loopCounter of LoopCnt= ",loopCounter1);
            Trace ("Current Sample Position = ",CurSmpPos);
            Trace ("Current DWP96 Position = ",CurDWP96);
            MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
            onerror goto errLabel_27 ;
            err.Clear();
            MECC::TraceComment(Translate("+++++++++++++++++++++++++++++ 1st Aspiration ++++++++++++++++++++++++++++++++"));
            if (para_Asp_cLLD_On == 0)
            {
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
            else
            {
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
            ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_nonError);
            errLabel_27 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_nonError);
              para_Asp_position.SetCurrentPosition(CurSmpPos);
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              Clot_Occurs = 1;
              ChannelError_1st = StrMid(ChannelSelection_AllError, 0, 1);
              ChannelError_2nd = StrMid(ChannelSelection_AllError, 1, 1);
              ChannelError_3rd = StrMid(ChannelSelection_AllError, 2, 1);
              ChannelError_4th = StrMid(ChannelSelection_AllError, 3, 1);
              ChannelError_5th = StrMid(ChannelSelection_AllError, 4, 1);
              ChannelError_6th = StrMid(ChannelSelection_AllError, 5, 1);
              ChannelError_7th = StrMid(ChannelSelection_AllError, 6, 1);
              ChannelError_8th = StrMid(ChannelSelection_AllError, 7, 1);
            }   /* end if from skip handler if no error */
            if (ChannelSelection_NotError != "00000000")
            {
              if (ChannelSelection_NotError == "11111111")
              {
                ChannelError_1st = 0;
                ChannelError_2nd = 0;
                ChannelError_3rd = 0;
                ChannelError_4th = 0;
                ChannelError_5th = 0;
                ChannelError_6th = 0;
                ChannelError_7th = 0;
                ChannelError_8th = 0;
              }
              if (para_Disp_cLLD_On == 0)
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              else
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              CurSmpPos = CurSmpPos + PresentTipNo;
              para_Asp_position.SetCurrentPosition(CurSmpPos);
            }
            else
            {
              subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              CurSmpPos = CurSmpPos + PresentTipNo;
              para_Asp_position.SetCurrentPosition(CurSmpPos);
            }
            CurDWP96 = CurDWP96 + PresentTipNo;
            para_Disp_position.SetCurrentPosition(CurDWP96);
            CurMovementPos = CurMovementPos + PresentTipNo;
            Move_Channel_Sequence.SetCurrentPosition(CurMovementPos);
            ChannelError.AddAsLast(ChannelError_1st);
            ChannelError.AddAsLast(ChannelError_2nd);
            ChannelError.AddAsLast(ChannelError_3rd);
            ChannelError.AddAsLast(ChannelError_4th);
            ChannelError.AddAsLast(ChannelError_5th);
            ChannelError.AddAsLast(ChannelError_6th);
            ChannelError.AddAsLast(ChannelError_7th);
            ChannelError.AddAsLast(ChannelError_8th);
            {
              loopCounter55 = 0;
              while (No_Tip_Error_Flag == 0)
              {
                loopCounter55 = loopCounter55 + 1;
                onerror goto errLabel_28 ;
                err.Clear();
                subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                if (file1_SimOn == 0)
                {
                  TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                  if (ChPatternAbort == "11110000")
                  {
                    No_Tip_Error_Flag = 1;
                  }
                  else
                  {
                    No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                  }
                }
                else
                {
                  No_Tip_Error_Flag = 1;
                }
                errLabel_28 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }   /* end if from skip handler if no error */
              }
            }
            No_Tip_Error_Flag = 0;
            if (SimOn == 0)
            {
              ChannelSelection_NotError = Translate("");
              PresentTipNo = 0;
              numOfChannels = DevGetCfgValueWithKey(subInstrument, 1);
              {
                for(channelIndex = 0; channelIndex < numOfChannels;)
                {
                  channelIndex = channelIndex + 1;
                  firmwareCommand = StrConcat4(Translate("P"), channelIndex, Translate("RW"), Translate(""));
                  {
                    	variable arrRetValues[];
                    	arrRetValues = subInstrument._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
                    	firmwareReturn = arrRetValues[3];
                  }
                  isTipThere = StrMid(firmwareReturn, 5, 1);
                  if (isTipThere == "1")
                  {
                    PresentTipNo = PresentTipNo + 1;
                  }
                  ChannelSelection_NotError = StrConcat2(ChannelSelection_NotError, isTipThere);
                }
              }
            }
            else
            {
              ChannelSelection_NotError = Translate("11110000");
              PresentTipNo = 4;
            }
            CurSmpPos = para_Asp_position.GetCurrentPosition();
            CurDWP96 = para_Disp_position.GetCurrentPosition();
            MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
            Trace ("loopCounter of LoopCnt= ",loopCounter1);
            Trace ("Current Sample Position = ",CurSmpPos);
            Trace ("Current DWP96 Position = ",CurDWP96);
            MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
            onerror goto errLabel_29 ;
            err.Clear();
            MECC::TraceComment(Translate("+++++++++++++++++++++++++++++ 1st Aspiration ++++++++++++++++++++++++++++++++"));
            if (para_Asp_cLLD_On == 0)
            {
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
            else
            {
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
            ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_nonError);
            errLabel_29 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_nonError);
              para_Asp_position.SetCurrentPosition(CurSmpPos);
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              Clot_Occurs = 1;
              ChannelError_1st = StrMid(ChannelSelection_AllError, 0, 1);
              ChannelError_2nd = StrMid(ChannelSelection_AllError, 1, 1);
              ChannelError_3rd = StrMid(ChannelSelection_AllError, 2, 1);
              ChannelError_4th = StrMid(ChannelSelection_AllError, 3, 1);
            }   /* end if from skip handler if no error */
            if (ChannelSelection_NotError != "00000000")
            {
              if (ChannelSelection_NotError == "11110000")
              {
                ChannelError_1st = 0;
                ChannelError_2nd = 0;
                ChannelError_3rd = 0;
                ChannelError_4th = 0;
              }
              if (para_Disp_cLLD_On == 0)
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              else
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              CurSmpPos = CurSmpPos + PresentTipNo;
              para_Asp_position.SetCurrentPosition(CurSmpPos);
            }
            else
            {
              subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              CurSmpPos = CurSmpPos + PresentTipNo;
              para_Asp_position.SetCurrentPosition(CurSmpPos);
            }
            CurDWP96 = CurDWP96 + PresentTipNo;
            para_Disp_position.SetCurrentPosition(CurDWP96);
            CurMovementPos = CurMovementPos + PresentTipNo;
            Move_Channel_Sequence.SetCurrentPosition(CurMovementPos);
            ChannelError.AddAsLast(ChannelError_1st);
            ChannelError.AddAsLast(ChannelError_2nd);
            ChannelError.AddAsLast(ChannelError_3rd);
            ChannelError.AddAsLast(ChannelError_4th);
          }
        }
        if (Remain_Sample > 0)
        {
          {
            for(loopCounter1 = 0; loopCounter1 < Re_LoopCnt;)
            {
              loopCounter1 = loopCounter1 + 1;
              {
                loopCounter55 = 0;
                while (No_Tip_Error_Flag == 0)
                {
                  loopCounter55 = loopCounter55 + 1;
                  onerror goto errLabel_30 ;
                  err.Clear();
                  subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                  if (file1_SimOn == 0)
                  {
                    TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                    if (ChPatternAbort == "11111111")
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    else
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }
                  }
                  else
                  {
                    No_Tip_Error_Flag = 1;
                  }
                  errLabel_30 : {}
                  onerror goto 0;
                  if (err.GetId() != 0)   /* skip handler if no error */
                  {
                    No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                  }   /* end if from skip handler if no error */
                }
              }
              No_Tip_Error_Flag = 0;
              if (SimOn == 0)
              {
                ChannelSelection_NotError = Translate("");
                PresentTipNo = 0;
                numOfChannels = DevGetCfgValueWithKey(subInstrument, 1);
                {
                  for(channelIndex = 0; channelIndex < numOfChannels;)
                  {
                    channelIndex = channelIndex + 1;
                    firmwareCommand = StrConcat4(Translate("P"), channelIndex, Translate("RW"), Translate(""));
                    {
                      	variable arrRetValues[];
                      	arrRetValues = subInstrument._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
                      	firmwareReturn = arrRetValues[3];
                    }
                    isTipThere = StrMid(firmwareReturn, 5, 1);
                    if (isTipThere == "1")
                    {
                      PresentTipNo = PresentTipNo + 1;
                    }
                    ChannelSelection_NotError = StrConcat2(ChannelSelection_NotError, isTipThere);
                  }
                }
              }
              else
              {
                ChannelSelection_NotError = Translate("11111111");
                PresentTipNo = 8;
              }
              SmpChk_Error_Flag = 1;
              CurSmpPos = para_Asp_position.GetCurrentPosition();
              CurDWP96 = para_Disp_position.GetCurrentPosition();
              MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
              Trace ("loopCounter of LoopCnt= ",loopCounter1);
              Trace ("Current Sample Position = ",CurSmpPos);
              Trace ("Current DWP96 Position = ",CurDWP96);
              MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
              onerror goto errLabel_31 ;
              err.Clear();
              MECC::TraceComment(Translate("+++++++++++++++++++++++++++++ 1st Aspiration ++++++++++++++++++++++++++++++++"));
              if (para_Asp_cLLD_On == 0)
              {
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              }
              else
              {
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              }
              ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_nonError);
              errLabel_31 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_nonError);
                para_Asp_position.SetCurrentPosition(CurSmpPos);
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                Clot_Occurs = 1;
                ChannelError_1st = StrMid(ChannelSelection_AllError, 0, 1);
                ChannelError_2nd = StrMid(ChannelSelection_AllError, 1, 1);
                ChannelError_3rd = StrMid(ChannelSelection_AllError, 2, 1);
                ChannelError_4th = StrMid(ChannelSelection_AllError, 3, 1);
                ChannelError_5th = StrMid(ChannelSelection_AllError, 4, 1);
                ChannelError_6th = StrMid(ChannelSelection_AllError, 5, 1);
                ChannelError_7th = StrMid(ChannelSelection_AllError, 6, 1);
                ChannelError_8th = StrMid(ChannelSelection_AllError, 7, 1);
              }   /* end if from skip handler if no error */
              if (ChannelSelection_NotError != "00000000")
              {
                if (ChannelSelection_NotError == "11111111")
                {
                  ChannelError_1st = 0;
                  ChannelError_2nd = 0;
                  ChannelError_3rd = 0;
                  ChannelError_4th = 0;
                  ChannelError_5th = 0;
                  ChannelError_6th = 0;
                  ChannelError_7th = 0;
                  ChannelError_8th = 0;
                }
                if (para_Disp_cLLD_On == 0)
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
                else
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
                subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                CurSmpPos = CurSmpPos + PresentTipNo;
                para_Asp_position.SetCurrentPosition(CurSmpPos);
              }
              else
              {
                subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                CurSmpPos = CurSmpPos + PresentTipNo;
                para_Asp_position.SetCurrentPosition(CurSmpPos);
              }
              CurDWP96 = CurDWP96 + PresentTipNo;
              para_Disp_position.SetCurrentPosition(CurDWP96);
              CurMovementPos = CurMovementPos + PresentTipNo;
              Move_Channel_Sequence.SetCurrentPosition(CurMovementPos);
              ChannelError.AddAsLast(ChannelError_1st);
              ChannelError.AddAsLast(ChannelError_2nd);
              ChannelError.AddAsLast(ChannelError_3rd);
              ChannelError.AddAsLast(ChannelError_4th);
              ChannelError.AddAsLast(ChannelError_5th);
              ChannelError.AddAsLast(ChannelError_6th);
              ChannelError.AddAsLast(ChannelError_7th);
              ChannelError.AddAsLast(ChannelError_8th);
            }
          }
          if (Re_Remain_Sample > 0)
          {
            {
              loopCounter55 = 0;
              while (No_Tip_Error_Flag == 0)
              {
                loopCounter55 = loopCounter55 + 1;
                onerror goto errLabel_32 ;
                err.Clear();
                subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                if (file1_SimOn == 0)
                {
                  TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                  if (ChPatternAbort == ChPattern_Remain12)
                  {
                    No_Tip_Error_Flag = 1;
                  }
                  else
                  {
                    No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                  }
                }
                else
                {
                  No_Tip_Error_Flag = 1;
                }
                errLabel_32 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }   /* end if from skip handler if no error */
              }
            }
            No_Tip_Error_Flag = 0;
            if (SimOn == 0)
            {
              ChannelSelection_NotError = Translate("");
              PresentTipNo = 0;
              numOfChannels = DevGetCfgValueWithKey(subInstrument, 1);
              {
                for(channelIndex = 0; channelIndex < numOfChannels;)
                {
                  channelIndex = channelIndex + 1;
                  firmwareCommand = StrConcat4(Translate("P"), channelIndex, Translate("RW"), Translate(""));
                  {
                    	variable arrRetValues[];
                    	arrRetValues = subInstrument._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
                    	firmwareReturn = arrRetValues[3];
                  }
                  isTipThere = StrMid(firmwareReturn, 5, 1);
                  if (isTipThere == "1")
                  {
                    PresentTipNo = PresentTipNo + 1;
                  }
                  ChannelSelection_NotError = StrConcat2(ChannelSelection_NotError, isTipThere);
                }
              }
            }
            else
            {
              ChannelSelection_NotError = ChPattern_Remain12;
              PresentTipNo = 8;
            }
            SmpChk_Error_Flag = 1;
            ChannelError_use = ChannelSelection_NotError;
            ChannelError_use = StrFVal(ChannelError_use);
            ChannelError_use = MthCeiling(ChannelError_use);
            ChannelError_No = ChannelError_use % 10000000;
            CurSmpPos = para_Asp_position.GetCurrentPosition();
            CurDWP96 = para_Disp_position.GetCurrentPosition();
            MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
            Trace ("loopCounter of LoopCnt= ",loopCounter1 + 1);
            Trace ("Current Sample Position = ",CurSmpPos);
            Trace ("Current DWP96 Position = ",CurDWP96);
            MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
            onerror goto errLabel_33 ;
            err.Clear();
            MECC::TraceComment(Translate("+++++++++++++++++++++++++++++ 1st Aspiration ++++++++++++++++++++++++++++++++"));
            if (para_Asp_cLLD_On == 0)
            {
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
            else
            {
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
            ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_nonError);
            errLabel_33 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_nonError);
              para_Asp_position.SetCurrentPosition(CurSmpPos);
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              Clot_Occurs = 1;
              ChannelError_1st = StrMid(ChannelSelection_AllError, 0, 1);
              ChannelError_2nd = StrMid(ChannelSelection_AllError, 1, 1);
              ChannelError_3rd = StrMid(ChannelSelection_AllError, 2, 1);
              ChannelError_4th = StrMid(ChannelSelection_AllError, 3, 1);
              ChannelError_5th = StrMid(ChannelSelection_AllError, 4, 1);
              ChannelError_6th = StrMid(ChannelSelection_AllError, 5, 1);
              ChannelError_7th = StrMid(ChannelSelection_AllError, 6, 1);
              ChannelError_8th = StrMid(ChannelSelection_AllError, 7, 1);
            }   /* end if from skip handler if no error */
            if (ChannelSelection_NotError != "00000000")
            {
              if (ChannelSelection_NotError == ChannelSelection_AllCh)
              {
                ChannelError_1st = 0;
                ChannelError_2nd = 0;
                ChannelError_3rd = 0;
                ChannelError_4th = 0;
                ChannelError_5th = 0;
                ChannelError_6th = 0;
                ChannelError_7th = 0;
                ChannelError_8th = 0;
              }
              if (para_Disp_cLLD_On == 0)
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              else
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              CurSmpPos = CurSmpPos + PresentTipNo;
              para_Asp_position.SetCurrentPosition(CurSmpPos);
            }
            else
            {
              subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              CurSmpPos = CurSmpPos + PresentTipNo;
              para_Asp_position.SetCurrentPosition(CurSmpPos);
            }
            CurDWP96 = CurDWP96 + PresentTipNo;
            para_Disp_position.SetCurrentPosition(CurDWP96);
            CurMovementPos = CurMovementPos + PresentTipNo;
            Move_Channel_Sequence.SetCurrentPosition(CurMovementPos);
            if (ChannelError_No == 0)
            {
              ChannelError.AddAsLast(ChannelError_1st);
            }
            if (ChannelError_No == 1000000)
            {
              ChannelError.AddAsLast(ChannelError_1st);
              ChannelError.AddAsLast(ChannelError_2nd);
            }
            if (ChannelError_No == 1100000)
            {
              ChannelError.AddAsLast(ChannelError_1st);
              ChannelError.AddAsLast(ChannelError_2nd);
              ChannelError.AddAsLast(ChannelError_3rd);
            }
            if (ChannelError_No == 1110000)
            {
              ChannelError.AddAsLast(ChannelError_1st);
              ChannelError.AddAsLast(ChannelError_2nd);
              ChannelError.AddAsLast(ChannelError_3rd);
              ChannelError.AddAsLast(ChannelError_4th);
            }
            if (ChannelError_No == 1111000)
            {
              ChannelError.AddAsLast(ChannelError_1st);
              ChannelError.AddAsLast(ChannelError_2nd);
              ChannelError.AddAsLast(ChannelError_3rd);
              ChannelError.AddAsLast(ChannelError_4th);
              ChannelError.AddAsLast(ChannelError_5th);
            }
            if (ChannelError_No == 1111100)
            {
              ChannelError.AddAsLast(ChannelError_1st);
              ChannelError.AddAsLast(ChannelError_2nd);
              ChannelError.AddAsLast(ChannelError_3rd);
              ChannelError.AddAsLast(ChannelError_4th);
              ChannelError.AddAsLast(ChannelError_5th);
              ChannelError.AddAsLast(ChannelError_6th);
            }
            if (ChannelError_No == 1111110)
            {
              ChannelError.AddAsLast(ChannelError_1st);
              ChannelError.AddAsLast(ChannelError_2nd);
              ChannelError.AddAsLast(ChannelError_3rd);
              ChannelError.AddAsLast(ChannelError_4th);
              ChannelError.AddAsLast(ChannelError_5th);
              ChannelError.AddAsLast(ChannelError_6th);
              ChannelError.AddAsLast(ChannelError_7th);
            }
          }
        }
      }
      else
      {
        Ch1Arr.SetSize(0);
        Ch2Arr.SetSize(0);
        Ch3Arr.SetSize(0);
        Ch4Arr.SetSize(0);
        Ch5Arr.SetSize(0);
        Ch6Arr.SetSize(0);
        Ch7Arr.SetSize(0);
        Ch8Arr.SetSize(0);
        file2.AddField("Premix", file2_Premix, hslString, 255);
        if( 0 == file2.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList$", hslRead) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
        }
        {
          for(loopCounter2 = 0; loopCounter2 < Sample_Cnt;)
          {
            loopCounter2 = loopCounter2 + 1;
            if( 0 == file2.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            Remain_Arr = loopCounter2 % 8;
            if (Remain_Arr == 1)
            {
              Ch1Arr.AddAsLast(file2_Premix);
            }
            if (Remain_Arr == 2)
            {
              Ch2Arr.AddAsLast(file2_Premix);
            }
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            if (Remain_Arr == 0)
            {
              Ch8Arr.AddAsLast(file2_Premix);
            }
          }
        }
        MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
        Ch1ArrSize_Test=Ch1Arr.GetSize();
        Ch2ArrSize_Test=Ch2Arr.GetSize();
        Ch3ArrSize_Test=Ch3Arr.GetSize();
        Ch4ArrSize_Test=Ch4Arr.GetSize();
        Ch5ArrSize_Test=Ch5Arr.GetSize();
        Ch6ArrSize_Test=Ch6Arr.GetSize();
        Ch7ArrSize_Test=Ch7Arr.GetSize();
        Ch8ArrSize_Test=Ch8Arr.GetSize();
        if( 0 != file2.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file2.RemoveFields();
        LoopCnt = Sample_Cnt / 8;
        Remain_Sample = Sample_Cnt % 8;
        {
          for(loopCounter1 = 0; loopCounter1 < LoopCnt;)
          {
            loopCounter1 = loopCounter1 + 1;
            {
              loopCounter55 = 0;
              while (No_Tip_Error_Flag == 0)
              {
                loopCounter55 = loopCounter55 + 1;
                onerror goto errLabel_34 ;
                err.Clear();
                subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                if (file1_SimOn == 0)
                {
                  TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                  if (ChPatternAbort == "11111111")
                  {
                    No_Tip_Error_Flag = 1;
                  }
                  else
                  {
                    No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                  }
                }
                else
                {
                  No_Tip_Error_Flag = 1;
                }
                errLabel_34 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }   /* end if from skip handler if no error */
              }
            }
            No_Tip_Error_Flag = 0;
            if (SimOn == 0)
            {
              ChannelSelection_NotError = Translate("");
              PresentTipNo = 0;
              numOfChannels = DevGetCfgValueWithKey(subInstrument, 1);
              {
                for(channelIndex = 0; channelIndex < numOfChannels;)
                {
                  channelIndex = channelIndex + 1;
                  firmwareCommand = StrConcat4(Translate("P"), channelIndex, Translate("RW"), Translate(""));
                  {
                    	variable arrRetValues[];
                    	arrRetValues = subInstrument._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
                    	firmwareReturn = arrRetValues[3];
                  }
                  isTipThere = StrMid(firmwareReturn, 5, 1);
                  if (isTipThere == "1")
                  {
                    PresentTipNo = PresentTipNo + 1;
                  }
                  ChannelSelection_NotError = StrConcat2(ChannelSelection_NotError, isTipThere);
                }
              }
            }
            else
            {
              ChannelSelection_NotError = Translate("11111111");
              PresentTipNo = 8;
            }
            CurSmpPos = para_Asp_position.GetCurrentPosition();
            CurDWP96 = para_Disp_position.GetCurrentPosition();
            MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
            Trace ("loopCounter of LoopCnt= ",loopCounter1);
            Trace ("Current Sample Position = ",CurSmpPos);
            Trace ("Current DWP96 Position = ",CurDWP96);
            MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
            MECC::TraceComment(Translate("+++++++++++++++++++++++++++++ PreMix ++++++++++++++++++++++++++++++++"));
            Ch1_Premix=Ch1Arr.GetAt(loopCounter1-1);
            Ch2_Premix=Ch2Arr.GetAt(loopCounter1-1);
            Ch3_Premix=Ch3Arr.GetAt(loopCounter1-1);
            Ch4_Premix=Ch4Arr.GetAt(loopCounter1-1);
            Ch5_Premix=Ch5Arr.GetAt(loopCounter1-1);
            Ch6_Premix=Ch6Arr.GetAt(loopCounter1-1);
            Ch7_Premix=Ch7Arr.GetAt(loopCounter1-1);
            Ch8_Premix=Ch8Arr.GetAt(loopCounter1-1);
            ChannelSelection_Premix = StrConcat8(Ch1_Premix, Ch2_Premix, Ch3_Premix, Ch4_Premix, Ch5_Premix, Ch6_Premix, Ch7_Premix, Ch8_Premix);
            Trace ("ChannelSelection_Premix = " , ChannelSelection_Premix );
            onerror goto errLabel_35 ;
            err.Clear();
            if (para_Asp_cLLD_On == 0)
            {
              if (ChannelSelection_Premix != "00000000")
              {
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              }
            }
            else
            {
              if (ChannelSelection_Premix != "00000000")
              {
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              }
            }
            errLabel_35 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
            }   /* end if from skip handler if no error */
            MECC::TraceComment(Translate("+++++++++++++++++++++++++++++ 1st Aspiration ++++++++++++++++++++++++++++++++"));
            onerror goto errLabel_36 ;
            err.Clear();
            if (para_Asp_cLLD_On == 0)
            {
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
            else
            {
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
            ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_nonError);
            errLabel_36 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_nonError);
              para_Asp_position.SetCurrentPosition(CurSmpPos);
              if (file2_Product_No != "PRODUCT_ANY_010")
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              if (para_Asp_cLLD_On != 0)
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              Clot_Occurs = 1;
              ChannelError_1st = StrMid(ChannelSelection_AllError, 0, 1);
              ChannelError_2nd = StrMid(ChannelSelection_AllError, 1, 1);
              ChannelError_3rd = StrMid(ChannelSelection_AllError, 2, 1);
              ChannelError_4th = StrMid(ChannelSelection_AllError, 3, 1);
              ChannelError_5th = StrMid(ChannelSelection_AllError, 4, 1);
              ChannelError_6th = StrMid(ChannelSelection_AllError, 5, 1);
              ChannelError_7th = StrMid(ChannelSelection_AllError, 6, 1);
              ChannelError_8th = StrMid(ChannelSelection_AllError, 7, 1);
            }   /* end if from skip handler if no error */
            if (ChannelSelection_NotError != "00000000")
            {
              if (para_Disp_cLLD_On == 0)
              {
                if (ChannelSelection_NotError == "11111111")
                {
                  ChannelError_1st = 0;
                  ChannelError_2nd = 0;
                  ChannelError_3rd = 0;
                  ChannelError_4th = 0;
                  ChannelError_5th = 0;
                  ChannelError_6th = 0;
                  ChannelError_7th = 0;
                  ChannelError_8th = 0;
                }
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              else
              {
                if (ChannelSelection_NotError == ChannelSelection_AllCh)
                {
                  ChannelError_1st = 0;
                  ChannelError_2nd = 0;
                  ChannelError_3rd = 0;
                  ChannelError_4th = 0;
                  ChannelError_5th = 0;
                  ChannelError_6th = 0;
                  ChannelError_7th = 0;
                  ChannelError_8th = 0;
                }
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              CurSmpPos = CurSmpPos + PresentTipNo;
              para_Asp_position.SetCurrentPosition(CurSmpPos);
            }
            else
            {
              subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              CurSmpPos = CurSmpPos + PresentTipNo;
              para_Asp_position.SetCurrentPosition(CurSmpPos);
            }
            CurDWP96 = CurDWP96 + PresentTipNo;
            para_Disp_position.SetCurrentPosition(CurDWP96);
            CurMovementPos = CurMovementPos + PresentTipNo;
            Move_Channel_Sequence.SetCurrentPosition(CurMovementPos);
            ChannelError.AddAsLast(ChannelError_1st);
            ChannelError.AddAsLast(ChannelError_2nd);
            ChannelError.AddAsLast(ChannelError_3rd);
            ChannelError.AddAsLast(ChannelError_4th);
            ChannelError.AddAsLast(ChannelError_5th);
            ChannelError.AddAsLast(ChannelError_6th);
            ChannelError.AddAsLast(ChannelError_7th);
            ChannelError.AddAsLast(ChannelError_8th);
          }
        }
        if (Remain_Sample > 0)
        {
          {
            loopCounter55 = 0;
            while (No_Tip_Error_Flag == 0)
            {
              loopCounter55 = loopCounter55 + 1;
              onerror goto errLabel_37 ;
              err.Clear();
              subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (file1_SimOn == 0)
              {
                TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                if (ChPatternAbort == ChPattern_Remain)
                {
                  No_Tip_Error_Flag = 1;
                }
                else
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }
              }
              else
              {
                No_Tip_Error_Flag = 1;
              }
              errLabel_37 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }   /* end if from skip handler if no error */
            }
          }
          No_Tip_Error_Flag = 0;
          if (SimOn == 0)
          {
            ChannelSelection_NotError = Translate("");
            PresentTipNo = 0;
            numOfChannels = DevGetCfgValueWithKey(subInstrument, 1);
            {
              for(channelIndex = 0; channelIndex < numOfChannels;)
              {
                channelIndex = channelIndex + 1;
                firmwareCommand = StrConcat4(Translate("P"), channelIndex, Translate("RW"), Translate(""));
                {
                  	variable arrRetValues[];
                  	arrRetValues = subInstrument._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
                  	firmwareReturn = arrRetValues[3];
                }
                isTipThere = StrMid(firmwareReturn, 5, 1);
                if (isTipThere == "1")
                {
                  PresentTipNo = PresentTipNo + 1;
                }
                ChannelSelection_NotError = StrConcat2(ChannelSelection_NotError, isTipThere);
              }
            }
          }
          else
          {
            ChannelSelection_NotError = ChPattern_Remain;
            PresentTipNo = 8;
          }
          SmpChk_Error_Flag = 1;
          ChannelError_use = ChannelSelection_NotError;
          ChannelError_use = StrFVal(ChannelError_use);
          ChannelError_use = MthCeiling(ChannelError_use);
          ChannelError_No = ChannelError_use % 10000000;
          CurSmpPos = para_Asp_position.GetCurrentPosition();
          CurDWP96 = para_Disp_position.GetCurrentPosition();
          MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
          Trace ("loopCounter of LoopCnt= ",loopCounter1 + 1);
          Trace ("Current Sample Position = ",CurSmpPos);
          Trace ("Current DWP96 Position = ",CurDWP96);
          MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
          MECC::TraceComment(Translate("+++++++++++++++++++++++++++++ PreMix ++++++++++++++++++++++++++++++++"));
          Ch1ArrSize=Ch1Arr.GetSize();
          Ch2ArrSize=Ch2Arr.GetSize();
          Ch3ArrSize=Ch3Arr.GetSize();
          Ch4ArrSize=Ch4Arr.GetSize();
          Ch5ArrSize=Ch5Arr.GetSize();
          Ch6ArrSize=Ch6Arr.GetSize();
          Ch7ArrSize=Ch7Arr.GetSize();
          Ch8ArrSize=Ch8Arr.GetSize();
          loopCounter6 = loopCounter1 + 1;
          if (Ch1ArrSize >= loopCounter6)
          {
            Ch1_Premix=Ch1Arr.GetAt(loopCounter6-1);
          }
          else
          {
            Ch1_Premix = 0;
          }
          if (Ch2ArrSize >= loopCounter6)
          {
            Ch2_Premix=Ch2Arr.GetAt(loopCounter6-1);
          }
          else
          {
            Ch2_Premix = 0;
          }
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          if (Ch8ArrSize >= loopCounter6)
          {
            Ch8_Premix=Ch8Arr.GetAt(loopCounter6-1);
          }
          else
          {
            Ch8_Premix = 0;
          }
          ChannelSelection_Premix = StrConcat8(Ch1_Premix, Ch2_Premix, Ch3_Premix, Ch4_Premix, Ch5_Premix, Ch6_Premix, Ch7_Premix, Ch8_Premix);
          Trace ("ChannelSelection_Premix = " , ChannelSelection_Premix );
          onerror goto errLabel_38 ;
          err.Clear();
          if (para_Asp_cLLD_On == 0)
          {
            if (ChannelSelection_Premix != "00000000")
            {
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
          }
          else
          {
            if (ChannelSelection_Premix != "00000000")
            {
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
          }
          errLabel_38 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
          }   /* end if from skip handler if no error */
          MECC::TraceComment(Translate("+++++++++++++++++++++++++++++ 1st Aspiration ++++++++++++++++++++++++++++++++"));
          onerror goto errLabel_39 ;
          err.Clear();
          if (para_Asp_cLLD_On == 0)
          {
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          else
          {
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_nonError);
          errLabel_39 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_nonError);
            para_Asp_position.SetCurrentPosition(CurSmpPos);
            if (file2_Product_No != "PRODUCT_ANY_010")
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            if (para_Asp_cLLD_On != 0)
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            Clot_Occurs = 1;
            ChannelError_1st = StrMid(ChannelSelection_AllError, 0, 1);
            ChannelError_2nd = StrMid(ChannelSelection_AllError, 1, 1);
            ChannelError_3rd = StrMid(ChannelSelection_AllError, 2, 1);
            ChannelError_4th = StrMid(ChannelSelection_AllError, 3, 1);
            ChannelError_5th = StrMid(ChannelSelection_AllError, 4, 1);
            ChannelError_6th = StrMid(ChannelSelection_AllError, 5, 1);
            ChannelError_7th = StrMid(ChannelSelection_AllError, 6, 1);
            ChannelError_8th = StrMid(ChannelSelection_AllError, 7, 1);
          }   /* end if from skip handler if no error */
          if (ChannelSelection_NotError != "00000000")
          {
            if (para_Disp_cLLD_On == 0)
            {
              if (ChannelSelection_NotError == ChannelSelection_AllCh)
              {
                ChannelError_1st = 0;
                ChannelError_2nd = 0;
                ChannelError_3rd = 0;
                ChannelError_4th = 0;
                ChannelError_5th = 0;
                ChannelError_6th = 0;
                ChannelError_7th = 0;
                ChannelError_8th = 0;
              }
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            else
            {
              if (ChannelSelection_NotError == ChannelSelection_AllCh)
              {
                ChannelError_1st = 0;
                ChannelError_2nd = 0;
                ChannelError_3rd = 0;
                ChannelError_4th = 0;
                ChannelError_5th = 0;
                ChannelError_6th = 0;
                ChannelError_7th = 0;
                ChannelError_8th = 0;
              }
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            CurSmpPos = CurSmpPos + PresentTipNo;
            para_Asp_position.SetCurrentPosition(CurSmpPos);
          }
          else
          {
            subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            CurSmpPos = CurSmpPos + PresentTipNo;
            para_Asp_position.SetCurrentPosition(CurSmpPos);
          }
          CurDWP96 = CurDWP96 + PresentTipNo;
          para_Disp_position.SetCurrentPosition(CurDWP96);
          CurMovementPos = CurMovementPos + PresentTipNo;
          Move_Channel_Sequence.SetCurrentPosition(CurMovementPos);
          if (ChannelError_No == 0)
          {
            ChannelError.AddAsLast(ChannelError_1st);
          }
          if (ChannelError_No == 1000000)
          {
            ChannelError.AddAsLast(ChannelError_1st);
            ChannelError.AddAsLast(ChannelError_2nd);
          }
          if (ChannelError_No == 1100000)
          {
            ChannelError.AddAsLast(ChannelError_1st);
            ChannelError.AddAsLast(ChannelError_2nd);
            ChannelError.AddAsLast(ChannelError_3rd);
          }
          if (ChannelError_No == 1110000)
          {
            ChannelError.AddAsLast(ChannelError_1st);
            ChannelError.AddAsLast(ChannelError_2nd);
            ChannelError.AddAsLast(ChannelError_3rd);
            ChannelError.AddAsLast(ChannelError_4th);
          }
          if (ChannelError_No == 1111000)
          {
            ChannelError.AddAsLast(ChannelError_1st);
            ChannelError.AddAsLast(ChannelError_2nd);
            ChannelError.AddAsLast(ChannelError_3rd);
            ChannelError.AddAsLast(ChannelError_4th);
            ChannelError.AddAsLast(ChannelError_5th);
          }
          if (ChannelError_No == 1111100)
          {
            ChannelError.AddAsLast(ChannelError_1st);
            ChannelError.AddAsLast(ChannelError_2nd);
            ChannelError.AddAsLast(ChannelError_3rd);
            ChannelError.AddAsLast(ChannelError_4th);
            ChannelError.AddAsLast(ChannelError_5th);
            ChannelError.AddAsLast(ChannelError_6th);
          }
          if (ChannelError_No == 1111110)
          {
            ChannelError.AddAsLast(ChannelError_1st);
            ChannelError.AddAsLast(ChannelError_2nd);
            ChannelError.AddAsLast(ChannelError_3rd);
            ChannelError.AddAsLast(ChannelError_4th);
            ChannelError.AddAsLast(ChannelError_5th);
            ChannelError.AddAsLast(ChannelError_6th);
            ChannelError.AddAsLast(ChannelError_7th);
          }
        }
      }
    }
    file99.AddField("NO", file99_No, hslString, 255);
    file99.AddField("LabwareID", file99_LabwareID, hslString, 255);
    file99.AddField("PositionID", file99_PositionID, hslString, 255);
    file99.AddField("ChannelError", file99_ChannelError, hslString, 255);
    file99.SetDelimiter(",");
    if( 0 == file99.Open("C:\\Seegene_Method_Setting\\Clot Error.csv", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\Clot Error.csv", "HxMetEdCompCmd");
    }
    Seq_SampleRacks.SetCurrentPosition(1);
    file99_No = 0;
    {
      for(loopCounter99 = 0; loopCounter99 < Sample_Cnt;)
      {
        loopCounter99 = loopCounter99 + 1;
        file99_No = file99_No + 1;
        file99_LabwareID = SeqGetLabwareId(Seq_SampleRacks);
        file99_PositionID = SeqGetPositionId(Seq_SampleRacks);
        file99_PositionID = StrIVal(file99_PositionID);
        file99_ChannelError=ChannelError.GetAt(file99_No-1);
        if( 0 == file99.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        SeqIncrement(Seq_SampleRacks, 1);
      }
    }
    if( 0 != file99.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file99.RemoveFields();
    para_Disp_position.SetCurrentPosition(1);
    Move_Channel_Sequence.SetCurrentPosition(1);
  }

  function Incubate( variable para_Incu_Time, variable para_Incu_Temp, variable para_Incu_Speed, variable SimOn, variable HHS1, device & subInstrument, variable Sample_Cnt, variable Sample_Cnt_Ini, variable ChPattern_Chk, variable ChPattern_Remain, variable ChPattern_Remain2, variable para_Asp_cLLD_On, sequence & para_Asp_position, variable para_Asp_Submerge_Depth, variable para_Asp_Bottom_Height, variable para_Asp_Retract_Distance, variable para_Asp_Premix_Vol, variable para_Asp_Premix_Cycle, variable para_Asp_Premix_ASD, variable para_Asp_ADC_On, variable para_Disp_cLLD_On, sequence & para_Disp_position, variable para_Disp_Submerge_Depth, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Disp_Postmix_Vol, variable para_Disp_Postmix_Cycle, variable para_Disp_Postmix_ASD, variable para_Liquid_Class, variable para_Liquid_Class_2, sequence & para_Tips, variable para_Volume, variable para_PreAliq_cLLD_On, variable para_PreAliq_Submerge_Depth, variable para_PreAliq_Bottom_Height, variable para_PreAliq_Retract_Distance, variable para_PreAliq_Volume, variable file4_Step_Name, variable file4_Tip_Sequence, sequence & para_Asp_position_2nd, variable STARMag_Remain, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep, variable ChPattern_Chk4 ) void {
    private variable HHS1_Temp;
    private variable IncubationDuration;
    private variable Button_If_Stopped;
    private timer timer2;
    private timer Incubation;
    private variable para_PreAliq_Disp_cLLD_On;
    private variable para_PreAliq_Disp_Bottom_Height;
    private variable para_PreAliq_Disp_Submerge_Depth;
    private variable IncubationTimeSoFar;
    private variable file2_Extraction_Kit;
    private sequence seq_LB200_premix_1;
    private sequence seq_LB200_premix_2;
    private variable loopCounter1_checkHHS;
    private dialog dialogHandle_40;
    if (SimOn == 0)
    {
      HSLHamHeaterShaker::GetTemperature(HHS1, HHS1_Temp);
      {
        loopCounter1_checkHHS = 0;
        while (HHS1_Temp < para_Incu_Temp)
        {
          loopCounter1_checkHHS = loopCounter1_checkHHS + 1;
          if (loopCounter1_checkHHS == 24)
          {
            HSLHamHeaterShaker::GetTemperature(HHS1, HHS1_Temp);
            if (HHS1_Temp < 50)
            {
              dialogHandle_40.SetOutput(Translate("HHS is not working."), "\n", Translate("Please contact the service center."), "\n", Translate("Method will abort."));
              if( 0 == dialogHandle_40.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              dialogHandle_40.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
              if( 0 == dialogHandle_40.PlaySound("") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              abort;
            }
          }
          MECC::TraceComment(Translate("****** Checking to see if heater is up to temperature ******"));
          if( 0 == timer2.SetTimer(5) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == timer2.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          HSLHamHeaterShaker::GetTemperature(HHS1, HHS1_Temp);
          Trace ("Current Temp : ", HHS1_Temp);
        }
      }
      if (para_Incu_Speed != 0)
      {
        HSLHamHeaterShaker::StartShaker(HHS1, para_Incu_Speed);
      }
      if( 0 == Incubation.SetTimer(para_Incu_Time) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if (file4_Step_Name == "Incubate_With_DW_Dispense")
      {
        Disp_Buffer(subInstrument, Sample_Cnt, Sample_Cnt_Ini, ChPattern_Chk, ChPattern_Remain, ChPattern_Remain2, para_Asp_cLLD_On, para_Asp_position, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_Disp_cLLD_On, para_PreAliq_Disp_Submerge_Depth, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file4_Step_Name, file4_Tip_Sequence, para_Asp_position_2nd, STARMag_Remain, Tip_Carrier_1mL, Tip_Carrier_300uL, file1_SimOn, Tip_Carrier_1mL_Thinprep, ChPattern_Chk4, file2_Extraction_Kit, seq_LB200_premix_1, seq_LB200_premix_2);
        IncubationTimeSoFar = Incubation.GetElapsedTime();
        Button_If_Stopped = Incubation.WaitTimer(hslTrue, hslTrue);
        if (0 == Button_If_Stopped)
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        Button_If_Stopped = Incubation.WaitTimer(hslTrue, hslTrue);
        if (0 == Button_If_Stopped)
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      if (Button_If_Stopped == 3)
      {
        IncubationDuration = Incubation.GetElapsedTime();
        Trace ("******** ALERT:  INCUBATION TIMER WAS STOPPED BY THE USER!");
        Trace ("******** Actual Incubation Duration (sec):  ", IncubationDuration);
      }
      HSLHamHeaterShaker::StopShaker(HHS1);
    }
  }

  function WasteBuffer( device & subInstrument, variable Sample_Cnt, variable ChPattern_Chk, variable ChPattern_Remain, variable para_Asp_cLLD_On, sequence & para_Asp_position, variable para_Asp_Submerge_Depth, variable para_Asp_Bottom_Height, variable para_Asp_Retract_Distance, sequence & para_Disp_position, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Liquid_Class, sequence & para_Tips, variable para_Volume, variable file4_Tip_Sequence, variable para_Reuse_Tip, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep ) void {
    private variable NumberOfAspiration;
    private variable Asp_Volume;
    private variable Remain_Sample;
    private variable loopCounter1;
    private variable Disp_Volume;
    private variable LoopCnt;
    private variable loopCounter2;
    private variable loopCounter55;
    private variable No_Tip_Error_Flag;
    private variable TipsStillOn;
    private variable ChPatternAbort;
    private variable fileB_Thinprep;
    No_Tip_Error_Flag = 0;
    LoopCnt = Sample_Cnt / 8;
    Remain_Sample = Sample_Cnt % 8;
    para_Volume = para_Volume + 10;
    NumberOfAspiration = para_Volume / (1000 * 1.0);
    if (NumberOfAspiration > 1)
    {
      Asp_Volume = para_Volume / (2 * 1.0);
    }
    else
    {
      Asp_Volume = para_Volume;
    }
    if (NumberOfAspiration > 2)
    {
      Asp_Volume = para_Volume / (3 * 1.0);
    }
    if (NumberOfAspiration > 3)
    {
      Asp_Volume = para_Volume / (4 * 1.0);
    }
    if (NumberOfAspiration > 4)
    {
      Asp_Volume = para_Volume / (5 * 1.0);
    }
    if (NumberOfAspiration > 2)
    {
      Disp_Volume = Asp_Volume - 10;
    }
    else
    {
      if (NumberOfAspiration > 1)
      {
        Disp_Volume = Asp_Volume - 20;
      }
      else
      {
        Disp_Volume = Asp_Volume - 10;
      }
    }
    Trace ("Total Waste Volume = " , para_Volume );
    Trace ("Number of Aspiration = " , NumberOfAspiration );
    Trace ("Asp_Volume = " , Asp_Volume );
    Trace ("Disp_Volume = " , Disp_Volume );
    Trace ("LoopCnt = " , LoopCnt );
    Trace ("Remain_Sample = ", Remain_Sample);
    {
      for(loopCounter1 = 0; loopCounter1 < LoopCnt;)
      {
        loopCounter1 = loopCounter1 + 1;
        {
          loopCounter55 = 0;
          while (No_Tip_Error_Flag == 0)
          {
            loopCounter55 = loopCounter55 + 1;
            onerror goto errLabel_41 ;
            err.Clear();
            subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            if (file1_SimOn == 0)
            {
              TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
              if (ChPatternAbort == "11111111")
              {
                No_Tip_Error_Flag = 1;
              }
              else
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }
            }
            else
            {
              No_Tip_Error_Flag = 1;
            }
            errLabel_41 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
            }   /* end if from skip handler if no error */
          }
        }
        No_Tip_Error_Flag = 0;
        {
          for(loopCounter2 = 0; loopCounter2 < NumberOfAspiration;)
          {
            loopCounter2 = loopCounter2 + 1;
            if (loopCounter2 < NumberOfAspiration)
            {
              if (para_Asp_cLLD_On == 0)
              {
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              }
              else
              {
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              }
            }
            else
            {
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    if (Remain_Sample > 0)
    {
      {
        loopCounter55 = 0;
        while (No_Tip_Error_Flag == 0)
        {
          loopCounter55 = loopCounter55 + 1;
          onerror goto errLabel_42 ;
          err.Clear();
          subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          if (file1_SimOn == 0)
          {
            TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
            if (ChPatternAbort == ChPattern_Remain)
            {
              No_Tip_Error_Flag = 1;
            }
            else
            {
              No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
            }
          }
          else
          {
            No_Tip_Error_Flag = 1;
          }
          errLabel_42 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
          }   /* end if from skip handler if no error */
        }
      }
      No_Tip_Error_Flag = 0;
      {
        for(loopCounter2 = 0; loopCounter2 < NumberOfAspiration;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (loopCounter2 < NumberOfAspiration)
          {
            if (para_Asp_cLLD_On == 0)
            {
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
            else
            {
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
          }
          else
          {
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
      }
      subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
  }

  function DispAndWaste_Buffer( device & subInstrument, variable Sample_Cnt, variable Sample_Cnt_Ini, variable ChPattern_Chk, variable ChPattern_Remain, variable para_Asp_cLLD_On, sequence & para_Asp_position, sequence & para_Asp_position_2nd, variable para_Asp_Submerge_Depth, variable para_Asp_Bottom_Height, variable para_Asp_Retract_Distance, variable para_Asp_Premix_Vol, variable para_Asp_Premix_Cycle, variable para_Asp_Premix_ASD, sequence & para_Disp_position, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Liquid_Class, variable para_Liquid_Class_2, sequence & para_Tips, variable para_Volume, sequence & seq_Liquidwaste, variable file4_Step_Name, variable file4_Tip_Sequence, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep, variable para_Asp_ADC_On ) void {
    private variable Remain_Sample;
    private variable LoopCnt;
    private variable loopCounter55;
    private variable No_Tip_Error_Flag;
    private variable TipsStillOn;
    private variable ChPatternAbort;
    private variable loopCounter1;
    private variable fileB_Thinprep;
    No_Tip_Error_Flag = 0;
    LoopCnt = Sample_Cnt / 8;
    Remain_Sample = Sample_Cnt % 8;
    Trace ("Disp_Volume = " , para_Volume );
    Trace ("LoopCnt = " , LoopCnt );
    Trace ("Remain_Sample = ", Remain_Sample);
    {
      for(loopCounter1 = 0; loopCounter1 < LoopCnt;)
      {
        loopCounter1 = loopCounter1 + 1;
        {
          loopCounter55 = 0;
          while (No_Tip_Error_Flag == 0)
          {
            loopCounter55 = loopCounter55 + 1;
            onerror goto errLabel_43 ;
            err.Clear();
            subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            if (file1_SimOn == 0)
            {
              TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
              if (ChPatternAbort == "11111111")
              {
                No_Tip_Error_Flag = 1;
              }
              else
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }
            }
            else
            {
              No_Tip_Error_Flag = 1;
            }
            errLabel_43 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
            }   /* end if from skip handler if no error */
          }
        }
        No_Tip_Error_Flag = 0;
        if (para_Asp_ADC_On == 0)
        {
          if (para_Asp_cLLD_On == 0)
          {
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          else
          {
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
        }
        else
        {
          HSLML_STAR::AntiDropletControl_1000ulChannel_On(subInstrument);
          if (para_Asp_cLLD_On == 0)
          {
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          else
          {
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          HSLML_STAR::AntiDropletControl_1000ulChannel_Off(subInstrument);
        }
        onerror goto errLabel_44 ;
        err.Clear();
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        errLabel_44 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }   /* end if from skip handler if no error */
        if (para_Asp_ADC_On == 0)
        {
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          HSLML_STAR::AntiDropletControl_1000ulChannel_On(subInstrument);
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          HSLML_STAR::AntiDropletControl_1000ulChannel_Off(subInstrument);
        }
        onerror goto errLabel_45 ;
        err.Clear();
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        errLabel_45 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }   /* end if from skip handler if no error */
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    if (Remain_Sample > 0)
    {
      {
        loopCounter55 = 0;
        while (No_Tip_Error_Flag == 0)
        {
          loopCounter55 = loopCounter55 + 1;
          onerror goto errLabel_46 ;
          err.Clear();
          subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          if (file1_SimOn == 0)
          {
            TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
            if (ChPatternAbort == ChPattern_Remain)
            {
              No_Tip_Error_Flag = 1;
            }
            else
            {
              No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
            }
          }
          else
          {
            No_Tip_Error_Flag = 1;
          }
          errLabel_46 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
          }   /* end if from skip handler if no error */
        }
      }
      No_Tip_Error_Flag = 0;
      if (para_Asp_ADC_On == 0)
      {
        if (para_Asp_cLLD_On == 0)
        {
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
      }
      else
      {
        HSLML_STAR::AntiDropletControl_1000ulChannel_On(subInstrument);
        if (para_Asp_cLLD_On == 0)
        {
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        HSLML_STAR::AntiDropletControl_1000ulChannel_Off(subInstrument);
      }
      onerror goto errLabel_47 ;
      err.Clear();
      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      errLabel_47 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      }   /* end if from skip handler if no error */
      if (para_Asp_ADC_On == 0)
      {
        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      }
      else
      {
        HSLML_STAR::AntiDropletControl_1000ulChannel_On(subInstrument);
        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        HSLML_STAR::AntiDropletControl_1000ulChannel_Off(subInstrument);
      }
      onerror goto errLabel_48 ;
      err.Clear();
      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      errLabel_48 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      }   /* end if from skip handler if no error */
      subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
  }

  function Move_DWP( device & subInstrument, sequence & Start_Location, sequence & Target_Location, variable SimOn, variable iSwap, sequence COREGripTool, variable Seegene_2Reagent50mLx6_1DWP_2PCR_R01_0001, variable Seegene_1HHS_1Magnet_1Tip_2Tube_R01_0001, variable HHS1 ) void {
    private variable para_start_labwareID;
    private variable PlateExist_Error_Flag;
    private dialog dialogHandle_49;
    private dialog dialogHandle_50;
    private dialog dialogHandle_51;
    private dialog dialogHandle_52;
    private dialog dialogHandle_53;
    private dialog dialogHandle_54;
    private variable HHS1_Temp;
    private variable para_target_labwareID;
    private dialog dialogHandle_55;
    private dialog dialogHandle_56;
    private dialog dialogHandle_57;
    private dialog dialogHandle_58;
    if (SimOn == 0)
    {
      para_target_labwareID = SeqGetLabwareId(Target_Location);
      if (iSwap == 1)
      {
        if (para_target_labwareID == "DWP96_HHS")
        {
          HSLHamHeaterShaker::GetTemperature(HHS1, HHS1_Temp);
          if (HHS1_Temp > 105)
          {
            dialogHandle_56.SetOutput(Translate("HHS is overheated."), "\n", Translate("Please contact the service center."), "\n", Translate("Method will abort."));
            if( 0 == dialogHandle_56.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_56.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_56.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
        subInstrument._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        subInstrument._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
        subInstrument._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
      }
      else
      {
        if (para_target_labwareID == "DWP96_HHS")
        {
          HSLHamHeaterShaker::GetTemperature(HHS1, HHS1_Temp);
          if (HHS1_Temp > 105)
          {
            dialogHandle_55.SetOutput(Translate("HHS is overheated."), "\n", Translate("Please contact the service center."), "\n", Translate("Method will abort."));
            if( 0 == dialogHandle_55.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_55.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_55.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
        PlateExist_Error_Flag = 1;
        {
          while (PlateExist_Error_Flag == 1)
          {
            onerror goto errLabel_59 ;
            err.Clear();
            subInstrument._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
            PlateExist_Error_Flag = 0;
            errLabel_59 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              PlateExist_Error_Flag = 1;
              para_start_labwareID = SeqGetLabwareId(Start_Location);
              subInstrument._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
              if (para_start_labwareID == "DWP96")
              {
                dialogHandle_50.SetOutput(Translate("The DWP is not installed."), "\n", Translate("Click OK to unload the carrier and to place the plate in the starting position."));
                if( 0 == dialogHandle_50.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_50.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_50.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                dialogHandle_58.SetOutput(Translate("Please put the plate in the starting position."), "\n", Translate("Then close the door and click OK to continue."));
                dialogHandle_58.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              }
              if (para_start_labwareID == "DWP96_HHS")
              {
                dialogHandle_53.SetOutput(Translate("The DWP is not installed."), "\n", Translate("Click OK to place the plate in the HHS position."));
                if( 0 == dialogHandle_53.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_53.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_53.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                dialogHandle_57.SetOutput(Translate("Please put the plate in the HHS position."), "\n", Translate("Then close the door and click OK to continue."));
                dialogHandle_57.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              }
              if (para_start_labwareID == "DWP96_Magnet")
              {
                dialogHandle_49.SetOutput(Translate("The DWP is not installed."), "\n", Translate("Click OK to unload the carrier and to place the plate in the magnet position."));
                if( 0 == dialogHandle_49.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_49.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_49.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                dialogHandle_52.SetOutput(Translate("Please put the plate in the magnet position."), "\n", Translate("Then close the door and click OK to continue."));
                dialogHandle_52.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              }
            }   /* end if from skip handler if no error */
          }
        }
        subInstrument._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        subInstrument._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      }
    }
  }

  function Disp_PKmix( device & subInstrument, variable Sample_Cnt, variable para_Liquid_Class, variable para_Liquid_Class_2, variable para_Liquid_Class_3, variable para_Volume, variable para_PreAliq_Volume, sequence & para_Tips, sequence & para_Asp_position, sequence & para_Asp_position_2nd, variable para_Asp_Submerge_Depth, variable para_PreAliq_Submerge_Depth, variable para_PreAliq_Bottom_Height, variable para_PreAliq_Retract_Distance, variable para_Asp_Premix_ASD, sequence & para_Disp_position, variable para_Disp_cLLD_On, variable para_Disp_Submerge_Depth, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable file4_Tip_Sequence, variable Tip_Carrier_1mL, variable Tip_Carrier_1mL_Thinprep, variable Tip_Carrier_300uL, variable file1_SimOn, variable file2_Extraction_Kit, variable file2_Product_No, variable STARMag_Remain, variable Tub_2_Remain ) void {
    private variable loopCounter55;
    private variable No_Tip_Error_Flag;
    private variable Loop_4;
    private variable Loop_Disp;
    private variable Vol_Disp;
    private variable loopCounter2;
    private variable Ch3_Volume;
    private variable Ch4_Volume;
    private variable loopCounter3;
    private variable loopCounter4;
    private variable TipsStillOn;
    private variable ChPatternAbort;
    private variable fileB_Thinprep;
    private variable loopCounter_PK;
    private variable PK_Error_Flag;
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    private dialog dialogHandle_176;
    if (file2_Extraction_Kit == 12)
    {
      No_Tip_Error_Flag = 0;
      PK_Error_Flag = 0;
      Asp_Volume = 0;
      Asp_Volume_2nd = 0;
      Asp_Volume_Remain = 0;
      if (Sample_Cnt <= 24)
      {
        Extra_Volume = 20;
      }
      else
      {
        Extra_Volume = 40;
      }
      if (Sample_Cnt <= 48)
      {
        Loop_Disp = Sample_Cnt % 4;
        Loop_4 = Sample_Cnt / 4;
        Loop_4 = Loop_4 * 2;
        Sample_Cnt_4n = Loop_4 * 2;
        if (Sample_Cnt <= STARMag_Remain)
        {
          if (Loop_4 != 0)
          {
            Asp_Volume = Loop_4 * para_Volume;
            Asp_Volume = Asp_Volume + Extra_Volume;
            {
              loopCounter_PK = 0;
              while (PK_Error_Flag == 0)
              {
                loopCounter_PK = loopCounter_PK + 1;
                {
                  loopCounter55 = 0;
                  while (No_Tip_Error_Flag == 0)
                  {
                    loopCounter55 = loopCounter55 + 1;
                    onerror goto errLabel_177 ;
                    err.Clear();
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    if (file1_SimOn == 0)
                    {
                      TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                      if (ChPatternAbort == "00110000")
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    errLabel_177 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }   /* end if from skip handler if no error */
                  }
                }
                No_Tip_Error_Flag = 0;
                onerror goto errLabel_178 ;
                err.Clear();
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                PK_Error_Flag = 1;
                errLabel_178 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  PK_Error_Flag = 0;
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  if (loopCounter_PK == 2)
                  {
                    dialogHandle_167.SetOutput(Translate("There is not enough PK."), "\n", Translate("Please dispense the PK by manual."));
                    if( 0 == dialogHandle_167.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_167.ShowOutput(Translate("Check the PK"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_167.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    abort;
                  }
                  dialogHandle_80.SetOutput(Translate("Check the PK tube and place PK tube on the designated position."), "\n", Translate("The number of PK tube is the same as the number of Extraction cartridge."));
                  if( 0 == dialogHandle_80.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_80.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_80.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  dialogHandle_171.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                  dialogHandle_171.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                }   /* end if from skip handler if no error */
              }
            }
            PK_Error_Flag = 0;
            {
              for(loopCounter1 = 0; loopCounter1 < Loop_4;)
              {
                loopCounter1 = loopCounter1 + 1;
                if (para_Disp_cLLD_On == 0)
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
                else
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
              }
            }
          }
          if (Loop_Disp != 0)
          {
            Asp_Volume = Loop_Disp * para_Volume;
            Asp_Volume = Asp_Volume + Extra_Volume;
            {
              loopCounter_PK = 0;
              while (PK_Error_Flag == 0)
              {
                loopCounter_PK = loopCounter_PK + 1;
                {
                  loopCounter55 = 0;
                  while (No_Tip_Error_Flag == 0)
                  {
                    loopCounter55 = loopCounter55 + 1;
                    onerror goto errLabel_179 ;
                    err.Clear();
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    if (file1_SimOn == 0)
                    {
                      TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                      if (ChPatternAbort == "00100000")
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    errLabel_179 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }   /* end if from skip handler if no error */
                  }
                }
                No_Tip_Error_Flag = 0;
                onerror goto errLabel_180 ;
                err.Clear();
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                PK_Error_Flag = 1;
                errLabel_180 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  PK_Error_Flag = 0;
                  subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  if (loopCounter_PK == 2)
                  {
                    dialogHandle_131.SetOutput(Translate("There is not enough PK."), "\n", Translate("Please dispense the PK by manual."));
                    if( 0 == dialogHandle_131.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_131.ShowOutput(Translate("Check the PK"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_131.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    abort;
                  }
                  dialogHandle_81.SetOutput(Translate("Check the PK tube and place PK tube on the designated position."), "\n", Translate("The number of PK tube is the same as the number of Extraction cartridge."));
                  if( 0 == dialogHandle_81.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_81.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_81.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  dialogHandle_170.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                  dialogHandle_170.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                }   /* end if from skip handler if no error */
              }
            }
            PK_Error_Flag = 0;
            {
              for(loopCounter2 = 0; loopCounter2 < Loop_Disp;)
              {
                loopCounter2 = loopCounter2 + 1;
                if (para_Disp_cLLD_On == 0)
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
                else
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
              }
            }
          }
        }
        else
        {
          if (Loop_4 != 0)
          {
            if (Sample_Cnt_4n <= STARMag_Remain)
            {
              Asp_Volume = Loop_4 * para_Volume;
              Asp_Volume = Asp_Volume + Extra_Volume;
              {
                loopCounter_PK = 0;
                while (PK_Error_Flag == 0)
                {
                  loopCounter_PK = loopCounter_PK + 1;
                  {
                    loopCounter55 = 0;
                    while (No_Tip_Error_Flag == 0)
                    {
                      loopCounter55 = loopCounter55 + 1;
                      onerror goto errLabel_181 ;
                      err.Clear();
                      subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                      if (file1_SimOn == 0)
                      {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                        if (ChPatternAbort == "00110000")
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                      }
                      else
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      errLabel_181 : {}
                      onerror goto 0;
                      if (err.GetId() != 0)   /* skip handler if no error */
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }   /* end if from skip handler if no error */
                    }
                  }
                  No_Tip_Error_Flag = 0;
                  onerror goto errLabel_182 ;
                  err.Clear();
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  PK_Error_Flag = 1;
                  errLabel_182 : {}
                  onerror goto 0;
                  if (err.GetId() != 0)   /* skip handler if no error */
                  {
                    PK_Error_Flag = 0;
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                    if (loopCounter_PK == 2)
                    {
                      dialogHandle_130.SetOutput(Translate("There is not enough PK."), "\n", Translate("Please dispense the PK by manual."));
                      if( 0 == dialogHandle_130.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                      {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      dialogHandle_130.ShowOutput(Translate("Check the PK"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                      if( 0 == dialogHandle_130.PlaySound("") )
                      {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      abort;
                    }
                    dialogHandle_94.SetOutput(Translate("Check the PK tube and place PK tube on the designated position."), "\n", Translate("The number of PK tube is the same as the number of Extraction cartridge."));
                    if( 0 == dialogHandle_94.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_94.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_94.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                    subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                    dialogHandle_176.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                    dialogHandle_176.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                    subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                    subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                  }   /* end if from skip handler if no error */
                }
              }
              PK_Error_Flag = 0;
              {
                for(loopCounter1 = 0; loopCounter1 < Loop_4;)
                {
                  loopCounter1 = loopCounter1 + 1;
                  if (para_Disp_cLLD_On == 0)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                  else
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                }
              }
            }
            else
            {
              if (Loop_4 >= STARMag_Remain)
              {
                Asp_Volume = STARMag_Remain * para_Volume + Extra_Volume;
                Asp_Volume_2nd = (Loop_4 - STARMag_Remain) * para_Volume;
                Asp_Volume_Remain = Loop_4 * para_Volume + Extra_Volume;
                Trace ("Asp_Volume = ", Asp_Volume);
                Trace ("Asp_Volume_2nd = ", Asp_Volume_2nd);
                Trace ("Asp_Volume_Remain = ", Asp_Volume_Remain);
                {
                  loopCounter_PK = 0;
                  while (PK_Error_Flag == 0)
                  {
                    loopCounter_PK = loopCounter_PK + 1;
                    {
                      loopCounter55 = 0;
                      while (No_Tip_Error_Flag == 0)
                      {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_183 ;
                        err.Clear();
                        subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        if (file1_SimOn == 0)
                        {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                        if (ChPatternAbort == "00110000")
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                        }
                        else
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        errLabel_183 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                      }
                    }
                    No_Tip_Error_Flag = 0;
                    onerror goto errLabel_184 ;
                    err.Clear();
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    PK_Error_Flag = 1;
                    errLabel_184 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      PK_Error_Flag = 0;
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                      if (loopCounter_PK == 2)
                      {
                        dialogHandle_150.SetOutput(Translate("There is not enough PK."), "\n", Translate("Please dispense the PK by manual."));
                        if( 0 == dialogHandle_150.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_150.ShowOutput(Translate("Check the PK"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_150.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                      }
                      dialogHandle_86.SetOutput(Translate("Check the PK tube and place PK tube on the designated position."), "\n", Translate("The number of PK tube is the same as the number of Extraction cartridge."));
                      if( 0 == dialogHandle_86.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                      {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      dialogHandle_86.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                      if( 0 == dialogHandle_86.PlaySound("") )
                      {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                      subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      dialogHandle_134.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                      dialogHandle_134.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                      subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                      subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                      subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                    }   /* end if from skip handler if no error */
                  }
                }
                PK_Error_Flag = 0;
                {
                  for(loopCounter1 = 0; loopCounter1 < Loop_4;)
                  {
                    loopCounter1 = loopCounter1 + 1;
                    if (para_Disp_cLLD_On == 0)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                  }
                }
              }
              else
              {
                Asp_Volume = Loop_4 * para_Volume + Extra_Volume;
                Asp_Volume_2nd = (STARMag_Remain - Loop_4) * para_Volume;
                Asp_Volume_Remain = (2 * Loop_4 - STARMag_Remain) * para_Volume + Extra_Volume;
                Trace ("Asp_Volume = ", Asp_Volume);
                Trace ("Asp_Volume_2nd = ", Asp_Volume_2nd);
                Trace ("Asp_Volume_Remain = ", Asp_Volume_Remain);
                {
                  loopCounter_PK = 0;
                  while (PK_Error_Flag == 0)
                  {
                    loopCounter_PK = loopCounter_PK + 1;
                    {
                      loopCounter55 = 0;
                      while (No_Tip_Error_Flag == 0)
                      {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_185 ;
                        err.Clear();
                        subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        if (file1_SimOn == 0)
                        {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                        if (ChPatternAbort == "00110000")
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                        }
                        else
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        errLabel_185 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                      }
                    }
                    No_Tip_Error_Flag = 0;
                    onerror goto errLabel_186 ;
                    err.Clear();
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    PK_Error_Flag = 1;
                    errLabel_186 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      PK_Error_Flag = 0;
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                      if (loopCounter_PK == 2)
                      {
                        dialogHandle_149.SetOutput(Translate("There is not enough PK."), "\n", Translate("Please dispense the PK by manual."));
                        if( 0 == dialogHandle_149.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_149.ShowOutput(Translate("Check the PK"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_149.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                      }
                      dialogHandle_88.SetOutput(Translate("Check the PK tube and place PK tube on the designated position."), "\n", Translate("The number of PK tube is the same as the number of Extraction cartridge."));
                      if( 0 == dialogHandle_88.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                      {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      dialogHandle_88.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                      if( 0 == dialogHandle_88.PlaySound("") )
                      {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                      subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      dialogHandle_166.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                      dialogHandle_166.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                      subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                      subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                      subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                    }   /* end if from skip handler if no error */
                  }
                }
                PK_Error_Flag = 0;
                {
                  for(loopCounter1 = 0; loopCounter1 < Loop_4;)
                  {
                    loopCounter1 = loopCounter1 + 1;
                    if (para_Disp_cLLD_On == 0)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                  }
                }
              }
            }
          }
          if (Loop_Disp != 0)
          {
            Asp_Volume = Loop_Disp * para_Volume;
            Asp_Volume = Asp_Volume + Extra_Volume;
            {
              loopCounter_PK = 0;
              while (PK_Error_Flag == 0)
              {
                loopCounter_PK = loopCounter_PK + 1;
                {
                  loopCounter55 = 0;
                  while (No_Tip_Error_Flag == 0)
                  {
                    loopCounter55 = loopCounter55 + 1;
                    onerror goto errLabel_187 ;
                    err.Clear();
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    if (file1_SimOn == 0)
                    {
                      TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                      if (ChPatternAbort == "00100000")
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    errLabel_187 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }   /* end if from skip handler if no error */
                  }
                }
                No_Tip_Error_Flag = 0;
                onerror goto errLabel_188 ;
                err.Clear();
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                PK_Error_Flag = 1;
                errLabel_188 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  PK_Error_Flag = 0;
                  subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  if (loopCounter_PK == 2)
                  {
                    dialogHandle_132.SetOutput(Translate("There is not enough PK."), "\n", Translate("Please dispense the PK by manual."));
                    if( 0 == dialogHandle_132.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_132.ShowOutput(Translate("Check the PK"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_132.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    abort;
                  }
                  dialogHandle_84.SetOutput(Translate("Check the PK tube and place PK tube on the designated position."), "\n", Translate("The number of PK tube is the same as the number of Extraction cartridge."));
                  if( 0 == dialogHandle_84.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_84.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_84.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  dialogHandle_157.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                  dialogHandle_157.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                }   /* end if from skip handler if no error */
              }
            }
            PK_Error_Flag = 0;
            {
              for(loopCounter2 = 0; loopCounter2 < Loop_Disp;)
              {
                loopCounter2 = loopCounter2 + 1;
                if (para_Disp_cLLD_On == 0)
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
                else
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
              }
            }
          }
        }
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      else
      {
        if (STARMag_Remain >= 48)
        {
          Asp_Volume = 24 * para_Volume;
          Asp_Volume = Asp_Volume + Extra_Volume;
          {
            loopCounter_PK = 0;
            while (PK_Error_Flag == 0)
            {
              loopCounter_PK = loopCounter_PK + 1;
              {
                loopCounter55 = 0;
                while (No_Tip_Error_Flag == 0)
                {
                  loopCounter55 = loopCounter55 + 1;
                  onerror goto errLabel_189 ;
                  err.Clear();
                  subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                  if (file1_SimOn == 0)
                  {
                    TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                    if (ChPatternAbort == "00110000")
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    else
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }
                  }
                  else
                  {
                    No_Tip_Error_Flag = 1;
                  }
                  errLabel_189 : {}
                  onerror goto 0;
                  if (err.GetId() != 0)   /* skip handler if no error */
                  {
                    No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                  }   /* end if from skip handler if no error */
                }
              }
              No_Tip_Error_Flag = 0;
              onerror goto errLabel_190 ;
              err.Clear();
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              errLabel_190 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                PK_Error_Flag = 0;
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                if (loopCounter_PK == 2)
                {
                  dialogHandle_140.SetOutput(Translate("There is not enough PK."), "\n", Translate("Please dispense the PK by manual."));
                  if( 0 == dialogHandle_140.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_140.ShowOutput(Translate("Check the PK"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_140.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  abort;
                }
                dialogHandle_97.SetOutput(Translate("Check the PK tube and place PK tube on the designated position."), "\n", Translate("The number of PK tube is the same as the number of Extraction cartridge."));
                if( 0 == dialogHandle_97.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_97.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_97.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                dialogHandle_165.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                dialogHandle_165.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
              }   /* end if from skip handler if no error */
            }
          }
          PK_Error_Flag = 0;
          {
            for(loopCounter1 = 0; loopCounter1 < 24;)
            {
              loopCounter1 = loopCounter1 + 1;
              if (para_Disp_cLLD_On == 0)
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              else
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
            }
          }
        }
        else
        {
          if (STARMag_Remain <= 24)
          {
            Asp_Volume = STARMag_Remain * para_Volume + Extra_Volume;
            Asp_Volume_2nd = (24 - STARMag_Remain) * para_Volume;
            Asp_Volume_Remain = 24 * para_Volume + Extra_Volume;
            Trace ("Asp_Volume = ", Asp_Volume);
            Trace ("Asp_Volume_2nd = ", Asp_Volume_2nd);
            Trace ("Asp_Volume_Remain = ", Asp_Volume_Remain);
            {
              loopCounter_PK = 0;
              while (PK_Error_Flag == 0)
              {
                loopCounter_PK = loopCounter_PK + 1;
                {
                  loopCounter55 = 0;
                  while (No_Tip_Error_Flag == 0)
                  {
                    loopCounter55 = loopCounter55 + 1;
                    onerror goto errLabel_191 ;
                    err.Clear();
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    if (file1_SimOn == 0)
                    {
                      TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                      if (ChPatternAbort == "00110000")
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    errLabel_191 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }   /* end if from skip handler if no error */
                  }
                }
                No_Tip_Error_Flag = 0;
                onerror goto errLabel_192 ;
                err.Clear();
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                PK_Error_Flag = 1;
                errLabel_192 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  PK_Error_Flag = 0;
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  if (loopCounter_PK == 2)
                  {
                    dialogHandle_160.SetOutput(Translate("There is not enough PK."), "\n", Translate("Please dispense the PK by manual."));
                    if( 0 == dialogHandle_160.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_160.ShowOutput(Translate("Check the PK"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_160.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    abort;
                  }
                  dialogHandle_100.SetOutput(Translate("Check the PK tube and place PK tube on the designated position."), "\n", Translate("The number of PK tube is the same as the number of Extraction cartridge."));
                  if( 0 == dialogHandle_100.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_100.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_100.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  dialogHandle_164.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                  dialogHandle_164.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                }   /* end if from skip handler if no error */
              }
            }
            PK_Error_Flag = 0;
            {
              for(loopCounter1 = 0; loopCounter1 < 24;)
              {
                loopCounter1 = loopCounter1 + 1;
                if (para_Disp_cLLD_On == 0)
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
                else
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
              }
            }
          }
          else
          {
            Asp_Volume = 24 * para_Volume + Extra_Volume;
            Asp_Volume_2nd = (STARMag_Remain - 24) * para_Volume;
            Asp_Volume_Remain = (48 - STARMag_Remain) * para_Volume + Extra_Volume;
            Trace ("Asp_Volume = ", Asp_Volume);
            Trace ("Asp_Volume_2nd = ", Asp_Volume_2nd);
            Trace ("Asp_Volume_Remain = ", Asp_Volume_Remain);
            {
              loopCounter_PK = 0;
              while (PK_Error_Flag == 0)
              {
                loopCounter_PK = loopCounter_PK + 1;
                {
                  loopCounter55 = 0;
                  while (No_Tip_Error_Flag == 0)
                  {
                    loopCounter55 = loopCounter55 + 1;
                    onerror goto errLabel_193 ;
                    err.Clear();
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    if (file1_SimOn == 0)
                    {
                      TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                      if (ChPatternAbort == "00110000")
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    errLabel_193 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }   /* end if from skip handler if no error */
                  }
                }
                No_Tip_Error_Flag = 0;
                onerror goto errLabel_194 ;
                err.Clear();
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                PK_Error_Flag = 1;
                errLabel_194 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  PK_Error_Flag = 0;
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  if (loopCounter_PK == 2)
                  {
                    dialogHandle_148.SetOutput(Translate("There is not enough PK."), "\n", Translate("Please dispense the PK by manual."));
                    if( 0 == dialogHandle_148.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_148.ShowOutput(Translate("Check the PK"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_148.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    abort;
                  }
                  dialogHandle_102.SetOutput(Translate("Check the PK tube and place PK tube on the designated position."), "\n", Translate("The number of PK tube is the same as the number of Extraction cartridge."));
                  if( 0 == dialogHandle_102.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_102.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_102.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  dialogHandle_175.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                  dialogHandle_175.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                }   /* end if from skip handler if no error */
              }
            }
            PK_Error_Flag = 0;
            {
              for(loopCounter1 = 0; loopCounter1 < 24;)
              {
                loopCounter1 = loopCounter1 + 1;
                if (para_Disp_cLLD_On == 0)
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
                else
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
              }
            }
          }
        }
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (STARMag_Remain > 48)
        {
          STARMag_Remain_Remain = STARMag_Remain - 48;
        }
        else
        {
          STARMag_Remain_Remain = 0;
        }
        Sample_Remain = Sample_Cnt - 48;
        Loop_Disp = Sample_Remain % 4;
        Loop_4 = Sample_Remain / 4;
        Loop_4 = Loop_4 * 2;
        Sample_Cnt_4n = Loop_4 * 2;
        if (Sample_Remain <= STARMag_Remain_Remain)
        {
          if (Loop_4 != 0)
          {
            Asp_Volume = Loop_4 * para_Volume;
            Asp_Volume = Asp_Volume + Extra_Volume;
            {
              loopCounter_PK = 0;
              while (PK_Error_Flag == 0)
              {
                loopCounter_PK = loopCounter_PK + 1;
                {
                  loopCounter55 = 0;
                  while (No_Tip_Error_Flag == 0)
                  {
                    loopCounter55 = loopCounter55 + 1;
                    onerror goto errLabel_195 ;
                    err.Clear();
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    if (file1_SimOn == 0)
                    {
                      TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                      if (ChPatternAbort == "00110000")
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    errLabel_195 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }   /* end if from skip handler if no error */
                  }
                }
                No_Tip_Error_Flag = 0;
                onerror goto errLabel_196 ;
                err.Clear();
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                PK_Error_Flag = 1;
                errLabel_196 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  PK_Error_Flag = 0;
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  if (loopCounter_PK == 2)
                  {
                    dialogHandle_174.SetOutput(Translate("There is not enough PK."), "\n", Translate("Please dispense the PK by manual."));
                    if( 0 == dialogHandle_174.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_174.ShowOutput(Translate("Check the PK"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_174.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    abort;
                  }
                  dialogHandle_106.SetOutput(Translate("Check the PK tube and place PK tube on the designated position."), "\n", Translate("The number of PK tube is the same as the number of Extraction cartridge."));
                  if( 0 == dialogHandle_106.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_106.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_106.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  dialogHandle_153.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                  dialogHandle_153.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                }   /* end if from skip handler if no error */
              }
            }
            PK_Error_Flag = 0;
            {
              for(loopCounter1 = 0; loopCounter1 < Loop_4;)
              {
                loopCounter1 = loopCounter1 + 1;
                if (para_Disp_cLLD_On == 0)
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
                else
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
              }
            }
          }
          if (Loop_Disp != 0)
          {
            Asp_Volume = Loop_Disp * para_Volume;
            Asp_Volume = Asp_Volume + Extra_Volume;
            {
              loopCounter_PK = 0;
              while (PK_Error_Flag == 0)
              {
                loopCounter_PK = loopCounter_PK + 1;
                {
                  loopCounter55 = 0;
                  while (No_Tip_Error_Flag == 0)
                  {
                    loopCounter55 = loopCounter55 + 1;
                    onerror goto errLabel_197 ;
                    err.Clear();
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    if (file1_SimOn == 0)
                    {
                      TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                      if (ChPatternAbort == "00100000")
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    errLabel_197 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }   /* end if from skip handler if no error */
                  }
                }
                No_Tip_Error_Flag = 0;
                onerror goto errLabel_198 ;
                err.Clear();
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                PK_Error_Flag = 1;
                errLabel_198 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  PK_Error_Flag = 0;
                  subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  if (loopCounter_PK == 2)
                  {
                    dialogHandle_133.SetOutput(Translate("There is not enough PK."), "\n", Translate("Please dispense the PK by manual."));
                    if( 0 == dialogHandle_133.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_133.ShowOutput(Translate("Check the PK"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_133.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    abort;
                  }
                  dialogHandle_108.SetOutput(Translate("Check the PK tube and place PK tube on the designated position."), "\n", Translate("The number of PK tube is the same as the number of Extraction cartridge."));
                  if( 0 == dialogHandle_108.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_108.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_108.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  dialogHandle_146.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                  dialogHandle_146.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                }   /* end if from skip handler if no error */
              }
            }
            PK_Error_Flag = 0;
            {
              for(loopCounter2 = 0; loopCounter2 < Loop_Disp;)
              {
                loopCounter2 = loopCounter2 + 1;
                if (para_Disp_cLLD_On == 0)
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
                else
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
              }
            }
          }
        }
        else
        {
          if (Loop_4 != 0)
          {
            if (Sample_Cnt_4n <= STARMag_Remain_Remain)
            {
              Asp_Volume = Loop_4 * para_Volume;
              Asp_Volume = Asp_Volume + Extra_Volume;
              {
                loopCounter_PK = 0;
                while (PK_Error_Flag == 0)
                {
                  loopCounter_PK = loopCounter_PK + 1;
                  {
                    loopCounter55 = 0;
                    while (No_Tip_Error_Flag == 0)
                    {
                      loopCounter55 = loopCounter55 + 1;
                      onerror goto errLabel_199 ;
                      err.Clear();
                      subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                      if (file1_SimOn == 0)
                      {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                        if (ChPatternAbort == "00110000")
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                      }
                      else
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      errLabel_199 : {}
                      onerror goto 0;
                      if (err.GetId() != 0)   /* skip handler if no error */
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }   /* end if from skip handler if no error */
                    }
                  }
                  No_Tip_Error_Flag = 0;
                  onerror goto errLabel_200 ;
                  err.Clear();
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  PK_Error_Flag = 1;
                  errLabel_200 : {}
                  onerror goto 0;
                  if (err.GetId() != 0)   /* skip handler if no error */
                  {
                    PK_Error_Flag = 0;
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                    if (loopCounter_PK == 2)
                    {
                      dialogHandle_159.SetOutput(Translate("There is not enough PK."), "\n", Translate("Please dispense the PK by manual."));
                      if( 0 == dialogHandle_159.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                      {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      dialogHandle_159.ShowOutput(Translate("Check the PK"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                      if( 0 == dialogHandle_159.PlaySound("") )
                      {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      abort;
                    }
                    dialogHandle_113.SetOutput(Translate("Check the PK tube and place PK tube on the designated position."), "\n", Translate("The number of PK tube is the same as the number of Extraction cartridge."));
                    if( 0 == dialogHandle_113.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_113.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_113.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                    subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                    dialogHandle_169.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                    dialogHandle_169.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                    subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                    subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                  }   /* end if from skip handler if no error */
                }
              }
              PK_Error_Flag = 0;
              {
                for(loopCounter1 = 0; loopCounter1 < Loop_4;)
                {
                  loopCounter1 = loopCounter1 + 1;
                  if (para_Disp_cLLD_On == 0)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                  else
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                }
              }
            }
            else
            {
              if (Loop_4 >= STARMag_Remain_Remain)
              {
                Asp_Volume = STARMag_Remain_Remain * para_Volume + Extra_Volume;
                Asp_Volume_2nd = (Loop_4 - STARMag_Remain_Remain) * para_Volume;
                Asp_Volume_Remain = Loop_4 * para_Volume + Extra_Volume;
                Trace ("Asp_Volume = ", Asp_Volume);
                Trace ("Asp_Volume_2nd = ", Asp_Volume_2nd);
                Trace ("Asp_Volume_Remain = ", Asp_Volume_Remain);
                if (STARMag_Remain_Remain != 0)
                {
                  {
                    loopCounter_PK = 0;
                    while (PK_Error_Flag == 0)
                    {
                      loopCounter_PK = loopCounter_PK + 1;
                      {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_201 ;
                        err.Clear();
                        subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        if (file1_SimOn == 0)
                        {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                        if (ChPatternAbort == "00110000")
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                        }
                        else
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        errLabel_201 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                      }
                      No_Tip_Error_Flag = 0;
                      onerror goto errLabel_202 ;
                      err.Clear();
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      PK_Error_Flag = 1;
                      errLabel_202 : {}
                      onerror goto 0;
                      if (err.GetId() != 0)   /* skip handler if no error */
                      {
                        PK_Error_Flag = 0;
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (loopCounter_PK == 2)
                        {
                        dialogHandle_129.SetOutput(Translate("There is not enough PK."), "\n", Translate("Please dispense the PK by manual."));
                        if( 0 == dialogHandle_129.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_129.ShowOutput(Translate("Check the PK"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_129.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_117.SetOutput(Translate("Check the PK tube and place PK tube on the designated position."), "\n", Translate("The number of PK tube is the same as the number of Extraction cartridge."));
                        if( 0 == dialogHandle_117.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_117.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_117.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_173.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_173.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                      }   /* end if from skip handler if no error */
                    }
                  }
                }
                else
                {
                  {
                    loopCounter_PK = 0;
                    while (PK_Error_Flag == 0)
                    {
                      loopCounter_PK = loopCounter_PK + 1;
                      {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_203 ;
                        err.Clear();
                        subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        if (file1_SimOn == 0)
                        {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                        if (ChPatternAbort == "00110000")
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                        }
                        else
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        errLabel_203 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                      }
                      No_Tip_Error_Flag = 0;
                      onerror goto errLabel_204 ;
                      err.Clear();
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      PK_Error_Flag = 1;
                      errLabel_204 : {}
                      onerror goto 0;
                      if (err.GetId() != 0)   /* skip handler if no error */
                      {
                        PK_Error_Flag = 0;
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (loopCounter_PK == 2)
                        {
                        dialogHandle_152.SetOutput(Translate("There is not enough PK."), "\n", Translate("Please dispense the PK by manual."));
                        if( 0 == dialogHandle_152.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_152.ShowOutput(Translate("Check the PK"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_152.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_118.SetOutput(Translate("Check the PK tube and place PK tube on the designated position."), "\n", Translate("The number of PK tube is the same as the number of Extraction cartridge."));
                        if( 0 == dialogHandle_118.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_118.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_118.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_135.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_135.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                      }   /* end if from skip handler if no error */
                    }
                  }
                }
                PK_Error_Flag = 0;
                {
                  for(loopCounter1 = 0; loopCounter1 < Loop_4;)
                  {
                    loopCounter1 = loopCounter1 + 1;
                    if (para_Disp_cLLD_On == 0)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                  }
                }
              }
              else
              {
                Asp_Volume = Loop_4 * para_Volume + Extra_Volume;
                Asp_Volume_2nd = (STARMag_Remain_Remain - Loop_4) * para_Volume;
                Asp_Volume_Remain = (2 * Loop_4 - STARMag_Remain_Remain) * para_Volume + Extra_Volume;
                Trace ("Asp_Volume = ", Asp_Volume);
                Trace ("Asp_Volume_2nd = ", Asp_Volume_2nd);
                Trace ("Asp_Volume_Remain = ", Asp_Volume_Remain);
                if (STARMag_Remain_Remain != 0)
                {
                  {
                    loopCounter_PK = 0;
                    while (PK_Error_Flag == 0)
                    {
                      loopCounter_PK = loopCounter_PK + 1;
                      {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_205 ;
                        err.Clear();
                        subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        if (file1_SimOn == 0)
                        {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                        if (ChPatternAbort == "00110000")
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                        }
                        else
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        errLabel_205 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                      }
                      No_Tip_Error_Flag = 0;
                      onerror goto errLabel_206 ;
                      err.Clear();
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      PK_Error_Flag = 1;
                      errLabel_206 : {}
                      onerror goto 0;
                      if (err.GetId() != 0)   /* skip handler if no error */
                      {
                        PK_Error_Flag = 0;
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (loopCounter_PK == 2)
                        {
                        dialogHandle_139.SetOutput(Translate("There is not enough PK."), "\n", Translate("Please dispense the PK by manual."));
                        if( 0 == dialogHandle_139.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_139.ShowOutput(Translate("Check the PK"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_139.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_123.SetOutput(Translate("Check the PK tube and place PK tube on the designated position."), "\n", Translate("The number of PK tube is the same as the number of Extraction cartridge."));
                        if( 0 == dialogHandle_123.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_123.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_123.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_147.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_147.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                      }   /* end if from skip handler if no error */
                    }
                  }
                }
                else
                {
                  {
                    loopCounter_PK = 0;
                    while (PK_Error_Flag == 0)
                    {
                      loopCounter_PK = loopCounter_PK + 1;
                      {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_207 ;
                        err.Clear();
                        subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        if (file1_SimOn == 0)
                        {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                        if (ChPatternAbort == "00110000")
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                        }
                        else
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        errLabel_207 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                      }
                      No_Tip_Error_Flag = 0;
                      onerror goto errLabel_208 ;
                      err.Clear();
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      PK_Error_Flag = 1;
                      errLabel_208 : {}
                      onerror goto 0;
                      if (err.GetId() != 0)   /* skip handler if no error */
                      {
                        PK_Error_Flag = 0;
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (loopCounter_PK == 2)
                        {
                        dialogHandle_168.SetOutput(Translate("There is not enough PK."), "\n", Translate("Please dispense the PK by manual."));
                        if( 0 == dialogHandle_168.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_168.ShowOutput(Translate("Check the PK"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_168.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_122.SetOutput(Translate("Check the PK tube and place PK tube on the designated position."), "\n", Translate("The number of PK tube is the same as the number of Extraction cartridge."));
                        if( 0 == dialogHandle_122.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_122.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_122.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_138.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_138.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                      }   /* end if from skip handler if no error */
                    }
                  }
                }
                PK_Error_Flag = 0;
                {
                  for(loopCounter1 = 0; loopCounter1 < Loop_4;)
                  {
                    loopCounter1 = loopCounter1 + 1;
                    if (para_Disp_cLLD_On == 0)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                  }
                }
              }
            }
          }
          if (Loop_Disp != 0)
          {
            Asp_Volume = Loop_Disp * para_Volume;
            Asp_Volume = Asp_Volume + Extra_Volume;
            {
              loopCounter_PK = 0;
              while (PK_Error_Flag == 0)
              {
                loopCounter_PK = loopCounter_PK + 1;
                {
                  loopCounter55 = 0;
                  while (No_Tip_Error_Flag == 0)
                  {
                    loopCounter55 = loopCounter55 + 1;
                    onerror goto errLabel_209 ;
                    err.Clear();
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    if (file1_SimOn == 0)
                    {
                      TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                      if (ChPatternAbort == "00100000")
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    errLabel_209 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }   /* end if from skip handler if no error */
                  }
                }
                No_Tip_Error_Flag = 0;
                onerror goto errLabel_210 ;
                err.Clear();
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                PK_Error_Flag = 1;
                errLabel_210 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  PK_Error_Flag = 0;
                  subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  if (loopCounter_PK == 2)
                  {
                    dialogHandle_137.SetOutput(Translate("There is not enough PK."), "\n", Translate("Please dispense the PK by manual."));
                    if( 0 == dialogHandle_137.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_137.ShowOutput(Translate("Check the PK"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_137.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    abort;
                  }
                  dialogHandle_127.SetOutput(Translate("Check the PK tube and place PK tube on the designated position."), "\n", Translate("The number of PK tube is the same as the number of Extraction cartridge."));
                  if( 0 == dialogHandle_127.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_127.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_127.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  dialogHandle_163.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                  dialogHandle_163.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                }   /* end if from skip handler if no error */
              }
            }
            PK_Error_Flag = 0;
            {
              for(loopCounter2 = 0; loopCounter2 < Loop_Disp;)
              {
                loopCounter2 = loopCounter2 + 1;
                if (para_Disp_cLLD_On == 0)
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
                else
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
              }
            }
          }
        }
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    else
    {
      No_Tip_Error_Flag = 0;
      PK_Error_Flag = 0;
      var_pk_total_vol = 0;
      if (para_Volume == 10) {
        if (Sample_Cnt <= 12)
        {var_pk_total_vol = (Sample_Cnt+2)*11+40;}
        else {
          if (Sample_Cnt <= 24)
          {var_pk_total_vol = (Sample_Cnt+2)*11+50;}
          else {
            if (Sample_Cnt <= 36)
            {var_pk_total_vol = (Sample_Cnt+2)*11+60;}
            else {
              if (Sample_Cnt <= 48)
              {var_pk_total_vol = (Sample_Cnt+2)*11+70;}
              else {
                if (Sample_Cnt <= 60)
                {var_pk_total_vol = (Sample_Cnt+2)*11+80;}
                else {
                  if (Sample_Cnt <= 72)
                  {var_pk_total_vol = (Sample_Cnt+2)*11+90;}
                  else {
                    if (Sample_Cnt <= 96)
                    {var_pk_total_vol = (Sample_Cnt+2)*11+100;}
                  }}}}}}
      }
      else {
        if (Sample_Cnt <= 12)
        {var_pk_total_vol = (Sample_Cnt+2)*6+40;}
        else {
          if (Sample_Cnt <= 24)
          {var_pk_total_vol = (Sample_Cnt+2)*6+50;}
          else {
            if (Sample_Cnt <= 36)
            {var_pk_total_vol = (Sample_Cnt+2)*6+60;}
            else {
              if (Sample_Cnt <= 48)
              {var_pk_total_vol = (Sample_Cnt+2)*6+70;}
              else {
                if (Sample_Cnt <= 60)
                {var_pk_total_vol = (Sample_Cnt+2)*6+80;}
                else {
                  if (Sample_Cnt <= 72)
                  {var_pk_total_vol = (Sample_Cnt+2)*6+90;}
                  else {
                    if (Sample_Cnt <= 96)
                    {var_pk_total_vol = (Sample_Cnt+2)*6+100;}
                  }}}}}}
      }
      Trace ("var_pk_total_vol =",var_pk_total_vol);
      if (para_Volume == 10)
      {
        var_pk_remain_vol = var_pk_total_vol - 550;
      }
      else
      {
        var_pk_remain_vol = var_pk_total_vol - 280;
      }
      if (file4_Tip_Sequence == 2)
      {
        Loop_4 = Sample_Cnt;
        Vol_Disp = Loop_4 * para_Volume;
        Vol_Disp = Vol_Disp + 40;
        Ch3_Volume = Vol_Disp;
        {
          loopCounter_PK = 0;
          while (PK_Error_Flag == 0)
          {
            loopCounter_PK = loopCounter_PK + 1;
            {
              loopCounter55 = 0;
              while (No_Tip_Error_Flag == 0)
              {
                loopCounter55 = loopCounter55 + 1;
                onerror goto errLabel_211 ;
                err.Clear();
                subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                if (file1_SimOn == 0)
                {
                  TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                  if (ChPatternAbort == "00100000")
                  {
                    No_Tip_Error_Flag = 1;
                  }
                  else
                  {
                    No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                  }
                }
                else
                {
                  No_Tip_Error_Flag = 1;
                }
                errLabel_211 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }   /* end if from skip handler if no error */
              }
            }
            No_Tip_Error_Flag = 0;
            onerror goto errLabel_212 ;
            err.Clear();
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            PK_Error_Flag = 1;
            errLabel_212 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              PK_Error_Flag = 0;
              subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              if (loopCounter_PK == 2)
              {
                dialogHandle_162.SetOutput(Translate("There is not enough or no PK."), "\n", Translate("Please dispense the PK by manual."));
                if( 0 == dialogHandle_162.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_162.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_162.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                abort;
              }
              dialogHandle_65.SetOutput(Translate("Check the required volume and place PK on the designated position."), "\n", Translate("Required PK volume:"), Translate(" "), var_pk_total_vol, Translate(" "), Translate("uL"));
              if( 0 == dialogHandle_65.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              dialogHandle_65.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              if( 0 == dialogHandle_65.PlaySound("") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
              dialogHandle_136.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
              dialogHandle_136.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
            }   /* end if from skip handler if no error */
          }
        }
        PK_Error_Flag = 0;
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        {
          for(loopCounter3 = 0; loopCounter3 < Loop_4;)
          {
            loopCounter3 = loopCounter3 + 1;
            if (para_Disp_cLLD_On == 0)
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            else
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
          }
        }
      }
      else
      {
        if (Sample_Cnt > 48)
        {
          if (para_Volume == 10)
          {
            Vol_Disp = 270;
          }
          else
          {
            Vol_Disp = 150;
          }
          {
            loopCounter_PK = 0;
            while (PK_Error_Flag == 0)
            {
              loopCounter_PK = loopCounter_PK + 1;
              {
                loopCounter55 = 0;
                while (No_Tip_Error_Flag == 0)
                {
                  loopCounter55 = loopCounter55 + 1;
                  onerror goto errLabel_213 ;
                  err.Clear();
                  subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                  if (file1_SimOn == 0)
                  {
                    TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                    if (ChPatternAbort == "00110000")
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    else
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }
                  }
                  else
                  {
                    No_Tip_Error_Flag = 1;
                  }
                  errLabel_213 : {}
                  onerror goto 0;
                  if (err.GetId() != 0)   /* skip handler if no error */
                  {
                    No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                  }   /* end if from skip handler if no error */
                }
              }
              No_Tip_Error_Flag = 0;
              onerror goto errLabel_214 ;
              err.Clear();
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              PK_Error_Flag = 1;
              errLabel_214 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                PK_Error_Flag = 0;
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                if (loopCounter_PK == 2)
                {
                  dialogHandle_145.SetOutput(Translate("There is not enough or no PK."), "\n", Translate("Please dispense the PK by manual."));
                  if( 0 == dialogHandle_145.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_145.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_145.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  abort;
                }
                dialogHandle_77.SetOutput(Translate("Check the required volume and place PK on the designated position."), "\n", Translate("Required PK volume:"), Translate(" "), var_pk_total_vol, Translate(" "), Translate("uL"));
                if( 0 == dialogHandle_77.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_77.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_77.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                dialogHandle_143.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                dialogHandle_143.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
              }   /* end if from skip handler if no error */
            }
          }
          PK_Error_Flag = 0;
          {
            for(loopCounter2 = 0; loopCounter2 < 24;)
            {
              loopCounter2 = loopCounter2 + 1;
              if (para_Disp_cLLD_On == 0)
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              else
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
            }
          }
          subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          Loop_4 = Sample_Cnt - 48;
          Loop_Disp = Loop_4 % 4;
          Loop_4 = Loop_4 / 4;
          Loop_4 = Loop_4 * 2;
          if (para_Volume == 10)
          {
            Vol_Disp = 270;
          }
          else
          {
            Vol_Disp = 150;
          }
        }
        else
        {
          Loop_4 = Sample_Cnt / 4;
          Loop_4 = Loop_4 * 2;
          Loop_Disp = Sample_Cnt % 4;
        }
        Vol_Disp = Loop_4 * para_Volume;
        if (Sample_Cnt <= 12)
        {
          Vol_Disp = Vol_Disp + 20;
        }
        else
        {
          Vol_Disp = Vol_Disp + 30;
        }
        Ch3_Volume = Vol_Disp;
        Ch4_Volume = Vol_Disp;
        if (Loop_Disp != 0)
        {
          Vol_Disp = Loop_Disp * para_Volume;
          Ch3_Volume = Ch3_Volume + Vol_Disp;
        }
        if (Sample_Cnt > 48)
        {
          if (Loop_4 == 0)
          {
            {
              loopCounter_PK = 0;
              while (PK_Error_Flag == 0)
              {
                loopCounter_PK = loopCounter_PK + 1;
                {
                  loopCounter55 = 0;
                  while (No_Tip_Error_Flag == 0)
                  {
                    loopCounter55 = loopCounter55 + 1;
                    onerror goto errLabel_215 ;
                    err.Clear();
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    if (file1_SimOn == 0)
                    {
                      TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                      if (ChPatternAbort == "00100000")
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    errLabel_215 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }   /* end if from skip handler if no error */
                  }
                }
                No_Tip_Error_Flag = 0;
                onerror goto errLabel_216 ;
                err.Clear();
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                PK_Error_Flag = 1;
                errLabel_216 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  PK_Error_Flag = 0;
                  subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  if (loopCounter_PK == 2)
                  {
                    dialogHandle_142.SetOutput(Translate("There is not enough or no PK."), "\n", Translate("Please dispense the PK by manual."));
                    if( 0 == dialogHandle_142.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_142.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_142.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    abort;
                  }
                  dialogHandle_71.SetOutput(Translate("Check the required volume and place PK on the designated position."), "\n", Translate("Required PK volume:"), Translate(" "), var_pk_remain_vol, Translate(" "), Translate("uL"));
                  if( 0 == dialogHandle_71.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_71.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_71.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  dialogHandle_161.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                  dialogHandle_161.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                }   /* end if from skip handler if no error */
              }
            }
            PK_Error_Flag = 0;
          }
          else
          {
            {
              loopCounter_PK = 0;
              while (PK_Error_Flag == 0)
              {
                loopCounter_PK = loopCounter_PK + 1;
                {
                  loopCounter55 = 0;
                  while (No_Tip_Error_Flag == 0)
                  {
                    loopCounter55 = loopCounter55 + 1;
                    onerror goto errLabel_217 ;
                    err.Clear();
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    if (file1_SimOn == 0)
                    {
                      TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                      if (ChPatternAbort == "00110000")
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    errLabel_217 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }   /* end if from skip handler if no error */
                  }
                }
                No_Tip_Error_Flag = 0;
                onerror goto errLabel_218 ;
                err.Clear();
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                PK_Error_Flag = 1;
                errLabel_218 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  PK_Error_Flag = 0;
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  if (loopCounter_PK == 2)
                  {
                    dialogHandle_172.SetOutput(Translate("There is not enough or no PK."), "\n", Translate("Please dispense the PK by manual."));
                    if( 0 == dialogHandle_172.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_172.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_172.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    abort;
                  }
                  dialogHandle_68.SetOutput(Translate("Check the required volume and place PK on the designated position."), "\n", Translate("Required PK volume:"), Translate(" "), var_pk_remain_vol, Translate(" "), Translate("uL"));
                  if( 0 == dialogHandle_68.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_68.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_68.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  dialogHandle_155.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                  dialogHandle_155.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                }   /* end if from skip handler if no error */
              }
            }
            PK_Error_Flag = 0;
          }
        }
        else
        {
          if (Loop_4 == 0)
          {
            {
              loopCounter_PK = 0;
              while (PK_Error_Flag == 0)
              {
                loopCounter_PK = loopCounter_PK + 1;
                {
                  loopCounter55 = 0;
                  while (No_Tip_Error_Flag == 0)
                  {
                    loopCounter55 = loopCounter55 + 1;
                    onerror goto errLabel_219 ;
                    err.Clear();
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    if (file1_SimOn == 0)
                    {
                      TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                      if (ChPatternAbort == "00100000")
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    errLabel_219 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }   /* end if from skip handler if no error */
                  }
                }
                No_Tip_Error_Flag = 0;
                onerror goto errLabel_220 ;
                err.Clear();
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                PK_Error_Flag = 1;
                errLabel_220 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  PK_Error_Flag = 0;
                  subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  if (loopCounter_PK == 2)
                  {
                    dialogHandle_158.SetOutput(Translate("There is not enough or no PK."), "\n", Translate("Please dispense the PK by manual."));
                    if( 0 == dialogHandle_158.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_158.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_158.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    abort;
                  }
                  dialogHandle_62.SetOutput(Translate("Check the required volume and place PK on the designated position."), "\n", Translate("Required PK volume:"), Translate(" "), var_pk_total_vol, Translate(" "), Translate("uL"));
                  if( 0 == dialogHandle_62.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_62.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_62.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  dialogHandle_141.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                  dialogHandle_141.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                }   /* end if from skip handler if no error */
              }
            }
            PK_Error_Flag = 0;
          }
          else
          {
            {
              loopCounter_PK = 0;
              while (PK_Error_Flag == 0)
              {
                loopCounter_PK = loopCounter_PK + 1;
                {
                  loopCounter55 = 0;
                  while (No_Tip_Error_Flag == 0)
                  {
                    loopCounter55 = loopCounter55 + 1;
                    onerror goto errLabel_221 ;
                    err.Clear();
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    if (file1_SimOn == 0)
                    {
                      TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                      if (ChPatternAbort == "00110000")
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    errLabel_221 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }   /* end if from skip handler if no error */
                  }
                }
                No_Tip_Error_Flag = 0;
                onerror goto errLabel_222 ;
                err.Clear();
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                PK_Error_Flag = 1;
                errLabel_222 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  PK_Error_Flag = 0;
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  if (loopCounter_PK == 2)
                  {
                    dialogHandle_144.SetOutput(Translate("There is not enough or no PK."), "\n", Translate("Please dispense the PK by manual."));
                    if( 0 == dialogHandle_144.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_144.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_144.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    abort;
                  }
                  dialogHandle_73.SetOutput(Translate("Check the required volume and place PK on the designated position."), "\n", Translate("Required PK volume:"), Translate(" "), var_pk_total_vol, Translate(" "), Translate("uL"));
                  if( 0 == dialogHandle_73.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_73.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_73.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  dialogHandle_151.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                  dialogHandle_151.ShowOutput(Translate("Check the Proteinase K"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                }   /* end if from skip handler if no error */
              }
            }
            PK_Error_Flag = 0;
          }
        }
        if (Loop_4 != 0)
        {
          {
            for(loopCounter3 = 0; loopCounter3 < Loop_4;)
            {
              loopCounter3 = loopCounter3 + 1;
              if (para_Disp_cLLD_On == 0)
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              else
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
            }
          }
        }
        {
          for(loopCounter4 = 0; loopCounter4 < Loop_Disp;)
          {
            loopCounter4 = loopCounter4 + 1;
            if (para_Disp_cLLD_On == 0)
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            else
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
          }
        }
      }
      subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      para_Disp_position.SetCurrentPosition(1);
    }
  }

  function No_Tip_Error_Handling( device & subInstrument, variable file4_Tip_Sequence, sequence & para_Tips, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable Tip_Carrier_1mL_Thinprep, variable fileB_Thinprep, sequence & seq_All_Tips_Full, sequence & seq_All_Tips_Thinprep, sequence & seq_300ul_Tips, sequence & seq_All_Tips_Part ) void {
    private file fileB;
    private variable loopCounter1;
    private variable TipsOnDeck_New_Full;
    private variable TipsOnDeck_New_Part;
    private variable TipsOnDeck_300;
    private variable TipsOnDeck_Thinprep;
    private dialog dialogHandle_223;
    private dialog dialogHandle_224;
    private dialog dialogHandle_225;
    subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    subInstrument._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    fileB.AddField("Thinprep", fileB_Thinprep, hslString, 255);
    if( 0 == fileB.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (fileB.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == fileB.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != fileB.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    fileB.RemoveFields();
    if (file4_Tip_Sequence == 1)
    {
      if (fileB_Thinprep == "true")
      {
        TipCount::Write2(para_Tips, Translate("All_Tips_Part_Counter"), subInstrument);
      }
      else
      {
        TipCount::Write2(para_Tips, Translate("All_Tips_Full_Counter"), subInstrument);
      }
    }
    if (file4_Tip_Sequence == 2)
    {
      TipCount::Write2(para_Tips, Translate("All_Tips_Thinprep_Counter"), subInstrument);
    }
    if (file4_Tip_Sequence == 3)
    {
      TipCount::Write2(para_Tips, Translate("All_300ul_Tips_Counter"), subInstrument);
    }
    subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    if (file4_Tip_Sequence == 1)
    {
      dialogHandle_224.SetOutput(Translate("No tip present. Please replace 1000 uL filter tips."), "\n", Translate("Click 'OK' to unload Tip Carriers."));
      if( 0 == dialogHandle_224.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
      {
            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      dialogHandle_224.ShowOutput(Translate("No tip present"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      if( 0 == dialogHandle_224.PlaySound("") )
      {
            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (file4_Tip_Sequence == 2)
    {
      dialogHandle_225.SetOutput(Translate("No tip present. Please replace 1 mL_Thinprep filter tips."), "\n", Translate("Click 'OK' to unload Tip Carriers."));
      if( 0 == dialogHandle_225.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
      {
            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      dialogHandle_225.ShowOutput(Translate("No tip present"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      if( 0 == dialogHandle_225.PlaySound("") )
      {
            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (file4_Tip_Sequence == 3)
    {
      dialogHandle_223.SetOutput(Translate("No tip present. Please replace 300 uL filter tips."), "\n", Translate("Click 'OK' to unload Tip Carriers."));
      if( 0 == dialogHandle_223.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
      {
            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      dialogHandle_223.ShowOutput(Translate("No tip present"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      if( 0 == dialogHandle_223.PlaySound("") )
      {
            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (file4_Tip_Sequence == 1)
    {
      if (fileB_Thinprep == "true")
      {
        TipCount::Edit2(para_Tips, Translate("All_Tips_Part_Counter"), subInstrument, 999);
        TipsOnDeck_New_Part = seq_All_Tips_Part.GetCount();
        Trace ("TipsOnDeck_New_Part = ", TipsOnDeck_New_Part);
      }
      else
      {
        TipCount::Edit2(para_Tips, Translate("All_Tips_Full_Counter"), subInstrument, 999);
        TipsOnDeck_New_Full = seq_All_Tips_Full.GetCount();
        Trace ("TipsOnDeck_New_Full = ", TipsOnDeck_New_Full);
      }
      subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (file4_Tip_Sequence == 2)
    {
      TipCount::Edit2(para_Tips, Translate("All_Tips_Thinprep_Counter"), subInstrument, 999);
      TipsOnDeck_Thinprep = seq_All_Tips_Thinprep.GetCount();
      Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
      subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (file4_Tip_Sequence == 3)
    {
      TipCount::Edit2(para_Tips, Translate("All_300ul_Tips_Counter"), subInstrument, 999);
      TipsOnDeck_300 = seq_300ul_Tips.GetCount();
      Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
      subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }

  function Disp_IC( device & subInstrument, variable para_Asp_cLLD_On, variable para_Asp_Submerge_Depth, sequence & para_Asp_position, variable para_Asp_Bottom_Height, variable para_Asp_Retract_Distance, variable para_Asp_Premix_ASD, sequence & para_Disp_position, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Liquid_Class, sequence & para_Tips, variable para_Volume, variable para_PreAliq_Bottom_Height, variable para_PreAliq_Retract_Distance, variable para_PreAliq_Volume, variable file4_Disp_position, variable para_Disp_Submerge_Depth, variable para_PreAliq_Submerge_Depth, variable Channel_RSel, variable SeqGetTotal_para_Disp_position, variable file4_Tip_Sequence, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep, variable para_Disp_cLLD_on ) void {
    private variable Asp_Volume;
    private variable Post_Aliq_Volume;
    private variable ExtraWell;
    private variable Mix_Cycle;
    private variable Sample_Cnt;
    private variable No_Tip_Error_Flag;
    private variable loopCounter1;
    private variable NumberOfAspirations;
    private variable loopCounter55;
    private variable loopCounter2;
    private variable TipsStillOn;
    private variable ChPatternAbort;
    private variable fileB_Thinprep;
    private variable IC_Error_Flag;
    private variable loopCounter4;
    private variable loopCounter5;
    private dialog dialogHandle_226;
    private dialog dialogHandle_227;
    private dialog dialogHandle_228;
    private dialog dialogHandle_229;
    private dialog dialogHandle_230;
    private dialog dialogHandle_231;
    private dialog dialogHandle_232;
    private dialog dialogHandle_233;
    private dialog dialogHandle_234;
    private dialog dialogHandle_235;
    No_Tip_Error_Flag = 0;
    NumberOfAspirations = 0;
    ExtraWell = 0;
    Asp_Volume = 0;
    Post_Aliq_Volume = 21.5;
    Sample_Cnt = SeqGetTotal_para_Disp_position;
    if (file4_Tip_Sequence == 2)
    {
      NumberOfAspirations = Sample_Cnt / 96;
      ExtraWell = Sample_Cnt - NumberOfAspirations * 96;
      MECC::TraceComment(Translate("/////////////////////////////////////////"));
      Trace ("Total IC Cnt = ", Sample_Cnt);
      Trace ("NumberOfAspirations = ", NumberOfAspirations);
      Trace ("ExtraWell = ", ExtraWell);
      Trace ("Disp_position_Code = ", file4_Disp_position);
      MECC::TraceComment(Translate("/////////////////////////////////////////"));
    }
    else
    {
      NumberOfAspirations = Sample_Cnt / 24;
      ExtraWell = Sample_Cnt - NumberOfAspirations * 24;
      MECC::TraceComment(Translate("/////////////////////////////////////////"));
      Trace ("Total IC Cnt = ", Sample_Cnt);
      Trace ("NumberOfAspirations = ", NumberOfAspirations);
      Trace ("ExtraWell = ", ExtraWell);
      Trace ("Disp_position_Code = ", file4_Disp_position);
      MECC::TraceComment(Translate("/////////////////////////////////////////"));
    }
    {
      for(loopCounter1 = 0; loopCounter1 < NumberOfAspirations;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 == 1)
        {
          Mix_Cycle = 1;
        }
        else
        {
          Mix_Cycle = 0;
        }
        MECC::TraceComment(Translate("/////////////////////////////////////////"));
        Asp_Volume = 24 * para_Volume + 31.5;
        Trace ("Asp_Volume = ", Asp_Volume);
        MECC::TraceComment(Translate("/////////////////////////////////////////"));
        IC_Error_Flag = 0;
        {
          loopCounter4 = 0;
          while (IC_Error_Flag == 0)
          {
            loopCounter4 = loopCounter4 + 1;
            {
              loopCounter55 = 0;
              while (No_Tip_Error_Flag == 0)
              {
                loopCounter55 = loopCounter55 + 1;
                onerror goto errLabel_236 ;
                err.Clear();
                subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                if (file1_SimOn == 0)
                {
                  TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                  if (ChPatternAbort == "01000000")
                  {
                    No_Tip_Error_Flag = 1;
                  }
                  else
                  {
                    No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                  }
                }
                else
                {
                  No_Tip_Error_Flag = 1;
                }
                errLabel_236 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }   /* end if from skip handler if no error */
              }
            }
            No_Tip_Error_Flag = 0;
            IC_Error_Flag = 0;
            onerror goto errLabel_237 ;
            err.Clear();
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            IC_Error_Flag = 1;
            errLabel_237 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              IC_Error_Flag = 0;
              subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              if (loopCounter4 == 2)
              {
                dialogHandle_234.SetOutput(Translate("There is not enough or no IC."), "\n", Translate("Please dispense the IC by manual."));
                if( 0 == dialogHandle_234.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_234.ShowOutput(Translate("Check the Internal Control"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_234.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                abort;
              }
              dialogHandle_231.SetOutput(Translate("Check the IC volume and place new IC on the designated position."));
              if( 0 == dialogHandle_231.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              dialogHandle_231.ShowOutput(Translate("Check the Internal Control"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              if( 0 == dialogHandle_231.PlaySound("") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
              dialogHandle_232.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
              dialogHandle_232.ShowOutput(Translate("Check the Internal Control"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
            }   /* end if from skip handler if no error */
          }
        }
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        {
          for(loopCounter2 = 0; loopCounter2 < 24;)
          {
            loopCounter2 = loopCounter2 + 1;
            if (para_Disp_cLLD_on == 0)
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            else
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
          }
        }
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    if (ExtraWell > 0)
    {
      if (NumberOfAspirations >= 1)
      {
        Mix_Cycle = 0;
      }
      else
      {
        Mix_Cycle = 1;
      }
      if (file4_Tip_Sequence == 2)
      {
        MECC::TraceComment(Translate("/////////////////////////////////////////"));
        Post_Aliq_Volume = 32;
        Asp_Volume = Sample_Cnt * para_Volume + 45;
        Trace ("Asp_Volume = ", Asp_Volume);
        MECC::TraceComment(Translate("/////////////////////////////////////////"));
      }
      else
      {
        MECC::TraceComment(Translate("/////////////////////////////////////////"));
        Asp_Volume = ExtraWell * para_Volume + (15 + 1.5 * (ExtraWell - 1));
        Trace ("Asp_Volume = ", Asp_Volume);
        MECC::TraceComment(Translate("/////////////////////////////////////////"));
      }
      IC_Error_Flag = 0;
      {
        loopCounter5 = 0;
        while (IC_Error_Flag == 0)
        {
          loopCounter5 = loopCounter5 + 1;
          {
            loopCounter55 = 0;
            while (No_Tip_Error_Flag == 0)
            {
              loopCounter55 = loopCounter55 + 1;
              onerror goto errLabel_238 ;
              err.Clear();
              subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (file1_SimOn == 0)
              {
                TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                if (ChPatternAbort == "01000000")
                {
                  No_Tip_Error_Flag = 1;
                }
                else
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }
              }
              else
              {
                No_Tip_Error_Flag = 1;
              }
              errLabel_238 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }   /* end if from skip handler if no error */
            }
          }
          No_Tip_Error_Flag = 0;
          onerror goto errLabel_239 ;
          err.Clear();
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          IC_Error_Flag = 1;
          errLabel_239 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            IC_Error_Flag = 0;
            subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            if (loopCounter5 == 2)
            {
              dialogHandle_233.SetOutput(Translate("There is not enough or no IC."), "\n", Translate("Please dispense the IC by manual."));
              if( 0 == dialogHandle_233.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              dialogHandle_233.ShowOutput(Translate("Check the Internal Control"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              if( 0 == dialogHandle_233.PlaySound("") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              abort;
            }
            dialogHandle_230.SetOutput(Translate("Check the IC volume and place new IC on the designated position."));
            if( 0 == dialogHandle_230.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_230.ShowOutput(Translate("Check the Internal Control"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_230.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            dialogHandle_235.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
            dialogHandle_235.ShowOutput(Translate("Check the Internal Control"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
          }   /* end if from skip handler if no error */
        }
      }
      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      {
        for(loopCounter2 = 0; loopCounter2 < ExtraWell;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (para_Disp_cLLD_on == 0)
          {
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
          else
          {
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
      }
      subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
  }

  function Disp_Bead( device & subInstrument, variable Sample_Cnt, sequence & para_Asp_position, sequence & para_Asp_position_2nd, variable para_Asp_Submerge_Depth, variable para_Asp_Premix_ASD, sequence & para_Disp_position, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Liquid_Class, sequence & para_Tips, variable para_Volume, variable STARMag_Remain, variable para_PreAliq_Volume, variable para_PreAliq_Bottom_Height, variable para_PreAliq_Retract_Distance, variable Tub_2_Remain, sequence & para_BB_Position, sequence & para_BB_Position_2nd, sequence & para_Bead_Position, sequence & para_Bead_Position_2nd, variable para_Liquid_Class_2, variable file4_Tip_Sequence, variable para_Liquid_Class_3, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep, variable file2_Product_No ) void {
    private variable BB_Volume_per_test;
    private variable BB_Volume_Remain;
    private variable BB_Volume_2nd;
    private variable loopCounter55;
    private variable No_Tip_Error_Flag;
    private variable BB_Volume;
    private variable Asp_Premix_Vol_Bead;
    private variable Bead_Volume_2nd;
    private variable Bead_Volume;
    private variable Asp_Premix_Cycle_Bead;
    private variable Bead_Volume_Remain;
    private variable Asp_Volume;
    private variable Asp_Premix_Vol;
    private variable Loop_4;
    private variable Asp_Premix_Cycle;
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    private dialog dialogHandle_284;
    No_Tip_Error_Flag = 0;
    Bead_Error_Flag = 0;
    if (para_PreAliq_Volume == 12)
    {
      MECC::TraceComment(Translate("***** Dispense Binding Buffer *****"));
      BB_Volume = 0;
      BB_Volume_2nd = 0;
      BB_Volume_Remain = 0;
      BB_Volume_per_test = 24 - para_Volume;
      {
        loopCounter55 = 0;
        while (No_Tip_Error_Flag == 0)
        {
          loopCounter55 = loopCounter55 + 1;
          onerror goto errLabel_285 ;
          err.Clear();
          subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          if (file1_SimOn == 0)
          {
            TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
            if (ChPatternAbort == "10000000")
            {
              No_Tip_Error_Flag = 1;
            }
            else
            {
              No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
            }
          }
          else
          {
            No_Tip_Error_Flag = 1;
          }
          errLabel_285 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
          }   /* end if from skip handler if no error */
        }
      }
      No_Tip_Error_Flag = 0;
      if (Sample_Cnt <= 48)
      {
        if (Sample_Cnt <= STARMag_Remain)
        {
          BB_Volume = (Sample_Cnt + 4) * BB_Volume_per_test * 1.1;
          Trace ("BB_Volume = ", BB_Volume);
          Trace ("BB_Volume_Remain = ", BB_Volume_Remain);
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          BB_Volume = (STARMag_Remain + 4) * BB_Volume_per_test * 1.1;
          BB_Volume_Remain = (Sample_Cnt - STARMag_Remain) * BB_Volume_per_test * 1.1;
          Trace ("BB_Volume = ", BB_Volume);
          Trace ("BB_Volume_Remain = ", BB_Volume_Remain);
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        BB_Volume = BB_Volume + BB_Volume_Remain;
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      }
      else
      {
        if (Sample_Cnt <= STARMag_Remain)
        {
          BB_Volume = (48 + 4) * BB_Volume_per_test * 1.1;
          BB_Volume_2nd = (Sample_Cnt - 48 + 4) * BB_Volume_per_test * 1.1;
          Trace ("BB_Volume = ", BB_Volume);
          Trace ("BB_Volume_2nd = ", BB_Volume_2nd);
          Trace ("BB_Volume_Remain = ", BB_Volume_Remain);
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          if (STARMag_Remain <= 48)
          {
            BB_Volume = (STARMag_Remain + 4) * BB_Volume_per_test * 1.1;
            BB_Volume_2nd = (48 - STARMag_Remain) * BB_Volume_per_test * 1.1;
            BB_Volume_Remain = (Sample_Cnt - 48 + 4) * BB_Volume_per_test * 1.1;
            Trace ("BB_Volume = ", BB_Volume);
            Trace ("BB_Volume_2nd = ", BB_Volume_2nd);
            Trace ("BB_Volume_Remain = ", BB_Volume_Remain);
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            BB_Volume = BB_Volume + BB_Volume_2nd;
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
          else
          {
            BB_Volume = (48 + 4) * BB_Volume_per_test * 1.1;
            BB_Volume_2nd = (STARMag_Remain - 48 + 4) * BB_Volume_per_test * 1.1;
            BB_Volume_Remain = (Sample_Cnt - STARMag_Remain) * BB_Volume_per_test * 1.1;
            Trace ("BB_Volume = ", BB_Volume);
            Trace ("BB_Volume_2nd = ", BB_Volume_2nd);
            Trace ("BB_Volume_Remain = ", BB_Volume_Remain);
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            BB_Volume = BB_Volume_2nd + BB_Volume_Remain;
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
      }
      subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      MECC::TraceComment(Translate("***** Dispense Bead *****"));
      Bead_Volume = 0;
      Bead_Volume_2nd = 0;
      Bead_Volume_Remain = 0;
      Asp_Premix_Cycle_Bead = 10;
      Asp_Premix_Vol_Bead = STARMag_Remain * para_Volume;
      Asp_Premix_Vol_Bead = Asp_Premix_Vol_Bead * 0.8;
      if (Asp_Premix_Vol_Bead > 900)
      {
        Asp_Premix_Vol_Bead = 900;
      }
      {
        loopCounter55 = 0;
        while (No_Tip_Error_Flag == 0)
        {
          loopCounter55 = loopCounter55 + 1;
          onerror goto errLabel_286 ;
          err.Clear();
          subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          if (file1_SimOn == 0)
          {
            TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
            if (ChPatternAbort == "10000000")
            {
              No_Tip_Error_Flag = 1;
            }
            else
            {
              No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
            }
          }
          else
          {
            No_Tip_Error_Flag = 1;
          }
          errLabel_286 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
          }   /* end if from skip handler if no error */
        }
      }
      No_Tip_Error_Flag = 0;
      if (Sample_Cnt <= 48)
      {
        if (Sample_Cnt <= STARMag_Remain)
        {
          Bead_Volume = (Sample_Cnt + 4) * para_Volume * 1.1;
          Trace ("Bead_Volume = ", Bead_Volume);
          Trace ("Bead_Volume_Remain = ", Bead_Volume_Remain);
          {
            loopCounter_Bead = 0;
            while (Bead_Error_Flag == 0)
            {
              loopCounter_Bead = loopCounter_Bead + 1;
              onerror goto errLabel_287 ;
              err.Clear();
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              Bead_Error_Flag = 1;
              errLabel_287 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                Bead_Error_Flag = 0;
                subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                if (loopCounter_Bead == 2)
                {
                  dialogHandle_276.SetOutput(Translate("There is no Bead."), "\n", Translate("Please dispense the Bead by manual."));
                  if( 0 == dialogHandle_276.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_276.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_276.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  abort;
                }
                dialogHandle_254.SetOutput(Translate("Check the Bead tube and place Bead tube on the designated position."), "\n", Translate("The number of Bead tube is the same as the number of Extraction cartridge."));
                if( 0 == dialogHandle_254.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_254.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_254.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                dialogHandle_271.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                dialogHandle_271.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                {
                  loopCounter55 = 0;
                  while (No_Tip_Error_Flag == 0)
                  {
                    loopCounter55 = loopCounter55 + 1;
                    onerror goto errLabel_288 ;
                    err.Clear();
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    if (file1_SimOn == 0)
                    {
                      TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                      if (ChPatternAbort == "10000000")
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    errLabel_288 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }   /* end if from skip handler if no error */
                  }
                }
                No_Tip_Error_Flag = 0;
              }   /* end if from skip handler if no error */
            }
          }
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          Bead_Volume = (STARMag_Remain + 4) * para_Volume * 1.1;
          Bead_Volume_Remain = (Sample_Cnt - STARMag_Remain) * para_Volume * 1.1;
          Trace ("Bead_Volume = ", Bead_Volume);
          Trace ("Bead_Volume_Remain = ", Bead_Volume_Remain);
          {
            loopCounter_Bead = 0;
            while (Bead_Error_Flag == 0)
            {
              loopCounter_Bead = loopCounter_Bead + 1;
              Order_Bead_Error_Flag = 0;
              onerror goto errLabel_289 ;
              err.Clear();
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              errLabel_289 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                Order_Bead_Error_Flag = 1;
              }   /* end if from skip handler if no error */
              onerror goto errLabel_290 ;
              err.Clear();
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              Bead_Error_Flag = 1;
              if (Order_Bead_Error_Flag == 1)
              {
                Bead_Error_Flag = 0;
              }
              errLabel_290 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                Order_Bead_Error_Flag = Order_Bead_Error_Flag + 2;
              }   /* end if from skip handler if no error */
              if (Order_Bead_Error_Flag > 0)
              {
                Bead_Error_Flag = 0;
                if (Order_Bead_Error_Flag >= 3)
                {
                  subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  if (loopCounter_Bead == 2)
                  {
                    dialogHandle_281.SetOutput(Translate("There is no Bead."), "\n", Translate("Please dispense the Bead by manual."));
                    if( 0 == dialogHandle_281.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_281.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_281.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    abort;
                  }
                  dialogHandle_245.SetOutput(Translate("Check the Bead tube and place Bead tube on the designated position."), "\n", Translate("The number of Bead tube is the same as the number of Extraction cartridge."));
                  if( 0 == dialogHandle_245.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_245.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_245.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  dialogHandle_248.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                  if( 0 == dialogHandle_248.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_248.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_248.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                  {
                    loopCounter55 = 0;
                    while (No_Tip_Error_Flag == 0)
                    {
                      loopCounter55 = loopCounter55 + 1;
                      onerror goto errLabel_291 ;
                      err.Clear();
                      subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                      if (file1_SimOn == 0)
                      {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                        if (ChPatternAbort == "10000000")
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                      }
                      else
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      errLabel_291 : {}
                      onerror goto 0;
                      if (err.GetId() != 0)   /* skip handler if no error */
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }   /* end if from skip handler if no error */
                    }
                  }
                  No_Tip_Error_Flag = 0;
                }
                else
                {
                  if (Order_Bead_Error_Flag == 1)
                  {
                    Order_Bead = Translate("first");
                  }
                  else
                  {
                    Order_Bead = Translate("second");
                  }
                  subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  if (loopCounter_Bead == 2)
                  {
                    dialogHandle_269.SetOutput(Translate("There is no Bead."), "\n", Translate("Please dispense the Bead by manual."));
                    if( 0 == dialogHandle_269.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_269.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_269.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    abort;
                  }
                  dialogHandle_257.SetOutput(Translate("Check the Bead tube and place Bead tube on the designated position."), "\n", Translate("The number of Bead tube is the same as the number of Extraction cartridge."));
                  if( 0 == dialogHandle_257.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_257.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_257.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  dialogHandle_272.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                  dialogHandle_272.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                  {
                    loopCounter55 = 0;
                    while (No_Tip_Error_Flag == 0)
                    {
                      loopCounter55 = loopCounter55 + 1;
                      onerror goto errLabel_292 ;
                      err.Clear();
                      subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                      if (file1_SimOn == 0)
                      {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                        if (ChPatternAbort == "10000000")
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                      }
                      else
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      errLabel_292 : {}
                      onerror goto 0;
                      if (err.GetId() != 0)   /* skip handler if no error */
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }   /* end if from skip handler if no error */
                    }
                  }
                  No_Tip_Error_Flag = 0;
                }
              }
            }
          }
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        Bead_Volume = Bead_Volume + Bead_Volume_Remain;
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      }
      else
      {
        if (Sample_Cnt <= STARMag_Remain)
        {
          Bead_Volume = (48 + 4) * para_Volume * 1.1;
          Bead_Volume_2nd = (Sample_Cnt - 48 + 4) * para_Volume * 1.1;
          Trace ("Bead_Volume = ", Bead_Volume);
          Trace ("Bead_Volume_2nd = ", Bead_Volume_2nd);
          Trace ("Bead_Volume_Remain = ", Bead_Volume_Remain);
          {
            loopCounter_Bead = 0;
            while (Bead_Error_Flag == 0)
            {
              loopCounter_Bead = loopCounter_Bead + 1;
              onerror goto errLabel_293 ;
              err.Clear();
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              Bead_Error_Flag = 1;
              errLabel_293 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                Bead_Error_Flag = 0;
                subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                if (loopCounter_Bead == 2)
                {
                  dialogHandle_267.SetOutput(Translate("There is no Bead."), "\n", Translate("Please dispense the Bead by manual."));
                  if( 0 == dialogHandle_267.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_267.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_267.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  abort;
                }
                dialogHandle_240.SetOutput(Translate("Check the Bead tube and place Bead tube on the designated position."), "\n", Translate("The number of Bead tube is the same as the number of Extraction cartridge."));
                if( 0 == dialogHandle_240.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_240.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_240.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                dialogHandle_274.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                dialogHandle_274.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                {
                  loopCounter55 = 0;
                  while (No_Tip_Error_Flag == 0)
                  {
                    loopCounter55 = loopCounter55 + 1;
                    onerror goto errLabel_294 ;
                    err.Clear();
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    if (file1_SimOn == 0)
                    {
                      TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                      if (ChPatternAbort == "10000000")
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    errLabel_294 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }   /* end if from skip handler if no error */
                  }
                }
                No_Tip_Error_Flag = 0;
              }   /* end if from skip handler if no error */
            }
          }
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          {
            loopCounter_Bead = 0;
            while (Bead_Error_Flag == 0)
            {
              loopCounter_Bead = loopCounter_Bead + 1;
              Order_Bead_Error_Flag = 0;
              onerror goto errLabel_295 ;
              err.Clear();
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              errLabel_295 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                Order_Bead_Error_Flag = 1;
              }   /* end if from skip handler if no error */
              onerror goto errLabel_296 ;
              err.Clear();
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              Bead_Error_Flag = 1;
              if (Order_Bead_Error_Flag == 1)
              {
                Bead_Error_Flag = 0;
              }
              errLabel_296 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                Order_Bead_Error_Flag = Order_Bead_Error_Flag + 2;
              }   /* end if from skip handler if no error */
              if (Order_Bead_Error_Flag > 0)
              {
                Bead_Error_Flag = 0;
                if (Order_Bead_Error_Flag >= 3)
                {
                  subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  if (loopCounter_Bead == 2)
                  {
                    dialogHandle_284.SetOutput(Translate("There is no Bead."), "\n", Translate("Please dispense the Bead by manual."));
                    if( 0 == dialogHandle_284.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_284.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_284.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    abort;
                  }
                  dialogHandle_255.SetOutput(Translate("Check the Bead tube and place Bead tube on the designated position."), "\n", Translate("The number of Bead tube is the same as the number of Extraction cartridge."));
                  if( 0 == dialogHandle_255.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_255.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_255.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  dialogHandle_282.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                  dialogHandle_282.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                  {
                    loopCounter55 = 0;
                    while (No_Tip_Error_Flag == 0)
                    {
                      loopCounter55 = loopCounter55 + 1;
                      onerror goto errLabel_297 ;
                      err.Clear();
                      subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                      if (file1_SimOn == 0)
                      {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                        if (ChPatternAbort == "10000000")
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                      }
                      else
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      errLabel_297 : {}
                      onerror goto 0;
                      if (err.GetId() != 0)   /* skip handler if no error */
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }   /* end if from skip handler if no error */
                    }
                  }
                  No_Tip_Error_Flag = 0;
                }
                else
                {
                  if (Order_Bead_Error_Flag == 1)
                  {
                    Order_Bead = Translate("first");
                  }
                  else
                  {
                    Order_Bead = Translate("second");
                  }
                  subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  if (loopCounter_Bead == 2)
                  {
                    dialogHandle_270.SetOutput(Translate("There is no Bead."), "\n", Translate("Please dispense the Bead by manual."));
                    if( 0 == dialogHandle_270.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_270.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_270.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    abort;
                  }
                  dialogHandle_251.SetOutput(Translate("Check the Bead tube and place Bead tube on the designated position."), "\n", Translate("The number of Bead tube is the same as the number of Extraction cartridge."));
                  if( 0 == dialogHandle_251.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_251.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_251.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  dialogHandle_278.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                  dialogHandle_278.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                  {
                    loopCounter55 = 0;
                    while (No_Tip_Error_Flag == 0)
                    {
                      loopCounter55 = loopCounter55 + 1;
                      onerror goto errLabel_298 ;
                      err.Clear();
                      subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                      if (file1_SimOn == 0)
                      {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                        if (ChPatternAbort == "10000000")
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                      }
                      else
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      errLabel_298 : {}
                      onerror goto 0;
                      if (err.GetId() != 0)   /* skip handler if no error */
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }   /* end if from skip handler if no error */
                    }
                  }
                  No_Tip_Error_Flag = 0;
                }
              }
            }
          }
          if (STARMag_Remain <= 48)
          {
            Bead_Volume = (STARMag_Remain + 4) * para_Volume * 1.1;
            Bead_Volume_2nd = (48 - STARMag_Remain) * para_Volume * 1.1;
            Bead_Volume_Remain = (Sample_Cnt - 48 + 4) * para_Volume * 1.1;
            Trace ("Bead_Volume = ", Bead_Volume);
            Trace ("Bead_Volume_2nd = ", Bead_Volume_2nd);
            Trace ("Bead_Volume_Remain = ", Bead_Volume_Remain);
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            Bead_Volume = Bead_Volume + Bead_Volume_2nd;
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
          else
          {
            Bead_Volume = (48 + 4) * para_Volume * 1.1;
            Bead_Volume_2nd = (STARMag_Remain - 48 + 4) * para_Volume * 1.1;
            Bead_Volume_Remain = (Sample_Cnt - STARMag_Remain) * para_Volume * 1.1;
            Trace ("Bead_Volume = ", Bead_Volume);
            Trace ("Bead_Volume_2nd = ", Bead_Volume_2nd);
            Trace ("Bead_Volume_Remain = ", Bead_Volume_Remain);
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            Bead_Volume = Bead_Volume_2nd + Bead_Volume_Remain;
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
      }
      subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      MECC::TraceComment(Translate("***** Dispense Bead + Binding Buffer Mixture *****"));
      A_Kit_Flag = 0;
      if (file2_Product_No == "PRODUCT_ALL_050")
      {
        A_Kit_Flag = 1;
      }
      if (file2_Product_No == "PRODUCT_ALL_054")
      {
        A_Kit_Flag = 1;
      }
      if (file2_Product_No == "PRODUCT_ALL_057")
      {
        A_Kit_Flag = 1;
      }
      if (Sample_Cnt <= 48)
      {
        Loop_Disp = Sample_Cnt % 4;
        Loop_4 = Sample_Cnt / 4;
        Loop_4 = Loop_4 * 2;
        if (Loop_4 != 0)
        {
          {
            loopCounter55 = 0;
            while (No_Tip_Error_Flag == 0)
            {
              loopCounter55 = loopCounter55 + 1;
              onerror goto errLabel_299 ;
              err.Clear();
              subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (file1_SimOn == 0)
              {
                TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                if (ChPatternAbort == "11000000")
                {
                  No_Tip_Error_Flag = 1;
                }
                else
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }
              }
              else
              {
                No_Tip_Error_Flag = 1;
              }
              errLabel_299 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }   /* end if from skip handler if no error */
            }
          }
          No_Tip_Error_Flag = 0;
        }
        else
        {
          {
            loopCounter55 = 0;
            while (No_Tip_Error_Flag == 0)
            {
              loopCounter55 = loopCounter55 + 1;
              onerror goto errLabel_300 ;
              err.Clear();
              subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (file1_SimOn == 0)
              {
                TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                if (ChPatternAbort == "10000000")
                {
                  No_Tip_Error_Flag = 1;
                }
                else
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }
              }
              else
              {
                No_Tip_Error_Flag = 1;
              }
              errLabel_300 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }   /* end if from skip handler if no error */
            }
          }
          No_Tip_Error_Flag = 0;
        }
        if (Loop_4 != 0)
        {
          Asp_Volume = Loop_4 * 24;
          Asp_Volume = Asp_Volume + 48;
          Asp_Premix_Vol = Sample_Cnt * 24;
          Asp_Premix_Vol = Asp_Premix_Vol * 0.8;
          if (Asp_Premix_Vol > 900)
          {
            Asp_Premix_Vol = 900;
          }
          Asp_Premix_Cycle = 10;
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (A_Kit_Flag == 1)
          {
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (A_Kit_Flag == 1)
          {
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
          {
            for(loopCounter1 = 0; loopCounter1 < Loop_4;)
            {
              loopCounter1 = loopCounter1 + 1;
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
          }
        }
        if (Loop_Disp != 0)
        {
          if (A_Kit_Flag == 1)
          {
            if (Loop_4 != 0)
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
          }
          Asp_Volume = Loop_Disp * 24;
          Asp_Volume = Asp_Volume + 24;
          if (Loop_4 == 0)
          {
            Asp_Premix_Vol = Sample_Cnt * 24;
            Asp_Premix_Vol = Asp_Premix_Vol * 0.8;
            if (Asp_Premix_Vol > 900)
            {
              Asp_Premix_Vol = 900;
            }
            Asp_Premix_Cycle = 10;
          }
          else
          {
            Asp_Premix_Vol = Asp_Volume;
            Asp_Premix_Cycle = 1;
          }
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (A_Kit_Flag == 1)
          {
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
          {
            for(loopCounter2 = 0; loopCounter2 < Loop_Disp;)
            {
              loopCounter2 = loopCounter2 + 1;
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
          }
        }
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      else
      {
        {
          loopCounter55 = 0;
          while (No_Tip_Error_Flag == 0)
          {
            loopCounter55 = loopCounter55 + 1;
            onerror goto errLabel_301 ;
            err.Clear();
            subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            if (file1_SimOn == 0)
            {
              TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
              if (ChPatternAbort == "11000000")
              {
                No_Tip_Error_Flag = 1;
              }
              else
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }
            }
            else
            {
              No_Tip_Error_Flag = 1;
            }
            errLabel_301 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
            }   /* end if from skip handler if no error */
          }
        }
        No_Tip_Error_Flag = 0;
        Asp_Volume = 24 * 24;
        Asp_Volume = Asp_Volume + 48;
        Asp_Premix_Vol = 48 * 24;
        Asp_Premix_Vol = Asp_Premix_Vol * 0.8;
        Asp_Premix_Cycle = 10;
        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (A_Kit_Flag == 1)
        {
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (A_Kit_Flag == 1)
        {
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        {
          for(loopCounter1 = 0; loopCounter1 < 24;)
          {
            loopCounter1 = loopCounter1 + 1;
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        Sample_Remain = Sample_Cnt - 48;
        Loop_Disp = Sample_Remain % 4;
        Loop_4 = Sample_Remain / 4;
        Loop_4 = Loop_4 * 2;
        if (Loop_4 != 0)
        {
          {
            loopCounter55 = 0;
            while (No_Tip_Error_Flag == 0)
            {
              loopCounter55 = loopCounter55 + 1;
              onerror goto errLabel_302 ;
              err.Clear();
              subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (file1_SimOn == 0)
              {
                TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                if (ChPatternAbort == "11000000")
                {
                  No_Tip_Error_Flag = 1;
                }
                else
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }
              }
              else
              {
                No_Tip_Error_Flag = 1;
              }
              errLabel_302 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }   /* end if from skip handler if no error */
            }
          }
          No_Tip_Error_Flag = 0;
        }
        else
        {
          {
            loopCounter55 = 0;
            while (No_Tip_Error_Flag == 0)
            {
              loopCounter55 = loopCounter55 + 1;
              onerror goto errLabel_303 ;
              err.Clear();
              subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (file1_SimOn == 0)
              {
                TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                if (ChPatternAbort == "10000000")
                {
                  No_Tip_Error_Flag = 1;
                }
                else
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }
              }
              else
              {
                No_Tip_Error_Flag = 1;
              }
              errLabel_303 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }   /* end if from skip handler if no error */
            }
          }
          No_Tip_Error_Flag = 0;
        }
        if (Loop_4 != 0)
        {
          Asp_Volume = Loop_4 * 24;
          Asp_Volume = Asp_Volume + 48;
          Asp_Premix_Vol = Sample_Remain * 24;
          Asp_Premix_Vol = Asp_Premix_Vol * 0.8;
          if (Asp_Premix_Vol > 900)
          {
            Asp_Premix_Vol = 900;
          }
          Asp_Premix_Cycle = 10;
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (A_Kit_Flag == 1)
          {
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (A_Kit_Flag == 1)
          {
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
          {
            for(loopCounter1 = 0; loopCounter1 < Loop_4;)
            {
              loopCounter1 = loopCounter1 + 1;
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
          }
        }
        if (Loop_Disp != 0)
        {
          if (A_Kit_Flag == 1)
          {
            if (Loop_4 != 0)
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
          }
          Asp_Volume = Loop_Disp * 24;
          Asp_Volume = Asp_Volume + 24;
          if (Loop_4 == 0)
          {
            Asp_Premix_Vol = Sample_Remain * 24;
            Asp_Premix_Vol = Asp_Premix_Vol * 0.8;
            if (Asp_Premix_Vol > 900)
            {
              Asp_Premix_Vol = 900;
            }
            Asp_Premix_Cycle = 10;
          }
          else
          {
            Asp_Premix_Vol = Asp_Volume;
            Asp_Premix_Cycle = 1;
          }
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (A_Kit_Flag == 1)
          {
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
          {
            for(loopCounter1 = 0; loopCounter1 < Loop_Disp;)
            {
              loopCounter1 = loopCounter1 + 1;
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
          }
        }
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    if (para_PreAliq_Volume == 10)
    {
      MECC::TraceComment(Translate("***** Bead checking & Premix *****"));
      Asp_Premix_Cycle_Bead = 10;
      Asp_Premix_Vol_Bead = 270;
      {
        loopCounter55 = 0;
        while (No_Tip_Error_Flag == 0)
        {
          loopCounter55 = loopCounter55 + 1;
          onerror goto errLabel_304 ;
          err.Clear();
          subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          if (file1_SimOn == 0)
          {
            TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
            if (ChPatternAbort == "10000000")
            {
              No_Tip_Error_Flag = 1;
            }
            else
            {
              No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
            }
          }
          else
          {
            No_Tip_Error_Flag = 1;
          }
          errLabel_304 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
          }   /* end if from skip handler if no error */
        }
      }
      No_Tip_Error_Flag = 0;
      if (Sample_Cnt <= STARMag_Remain)
      {
        {
          loopCounter_Bead = 0;
          while (Bead_Error_Flag == 0)
          {
            loopCounter_Bead = loopCounter_Bead + 1;
            onerror goto errLabel_305 ;
            err.Clear();
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            Bead_Error_Flag = 1;
            errLabel_305 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              Bead_Error_Flag = 0;
              subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              if (loopCounter_Bead == 2)
              {
                dialogHandle_268.SetOutput(Translate("There is no Bead."), "\n", Translate("Please dispense the Bead by manual."));
                if( 0 == dialogHandle_268.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_268.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_268.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                abort;
              }
              dialogHandle_262.SetOutput(Translate("Check the Bead tube and place Bead tube on the designated position."), "\n", Translate("The number of Bead tube is the same as the number of Extraction cartridge."));
              if( 0 == dialogHandle_262.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              dialogHandle_262.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              if( 0 == dialogHandle_262.PlaySound("") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
              dialogHandle_275.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
              dialogHandle_275.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
              {
                loopCounter55 = 0;
                while (No_Tip_Error_Flag == 0)
                {
                  loopCounter55 = loopCounter55 + 1;
                  onerror goto errLabel_306 ;
                  err.Clear();
                  subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                  if (file1_SimOn == 0)
                  {
                    TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                    if (ChPatternAbort == "10000000")
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    else
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }
                  }
                  else
                  {
                    No_Tip_Error_Flag = 1;
                  }
                  errLabel_306 : {}
                  onerror goto 0;
                  if (err.GetId() != 0)   /* skip handler if no error */
                  {
                    No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                  }   /* end if from skip handler if no error */
                }
              }
              No_Tip_Error_Flag = 0;
            }   /* end if from skip handler if no error */
          }
        }
      }
      else
      {
        {
          loopCounter_Bead = 0;
          while (Bead_Error_Flag == 0)
          {
            loopCounter_Bead = loopCounter_Bead + 1;
            Order_Bead_Error_Flag = 0;
            onerror goto errLabel_307 ;
            err.Clear();
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            errLabel_307 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              Order_Bead_Error_Flag = 1;
            }   /* end if from skip handler if no error */
            onerror goto errLabel_308 ;
            err.Clear();
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            Bead_Error_Flag = 1;
            if (Order_Bead_Error_Flag == 1)
            {
              Bead_Error_Flag = 0;
            }
            errLabel_308 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              Order_Bead_Error_Flag = Order_Bead_Error_Flag + 2;
            }   /* end if from skip handler if no error */
            if (Order_Bead_Error_Flag > 0)
            {
              Bead_Error_Flag = 0;
              if (Order_Bead_Error_Flag >= 3)
              {
                subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                if (loopCounter_Bead == 2)
                {
                  dialogHandle_277.SetOutput(Translate("There is no Bead."), "\n", Translate("Please dispense the Bead by manual."));
                  if( 0 == dialogHandle_277.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_277.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_277.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  abort;
                }
                dialogHandle_260.SetOutput(Translate("Check the Bead tube and place Bead tube on the designated position."), "\n", Translate("The number of Bead tube is the same as the number of Extraction cartridge."));
                if( 0 == dialogHandle_260.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_260.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_260.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                dialogHandle_280.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                dialogHandle_280.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                {
                  loopCounter55 = 0;
                  while (No_Tip_Error_Flag == 0)
                  {
                    loopCounter55 = loopCounter55 + 1;
                    onerror goto errLabel_309 ;
                    err.Clear();
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    if (file1_SimOn == 0)
                    {
                      TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                      if (ChPatternAbort == "10000000")
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    errLabel_309 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }   /* end if from skip handler if no error */
                  }
                }
                No_Tip_Error_Flag = 0;
              }
              else
              {
                if (Order_Bead_Error_Flag == 1)
                {
                  Order_Bead = Translate("first");
                }
                else
                {
                  Order_Bead = Translate("second");
                }
                subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                if (loopCounter_Bead == 2)
                {
                  dialogHandle_283.SetOutput(Translate("There is no Bead."), "\n", Translate("Please dispense the Bead by manual."));
                  if( 0 == dialogHandle_283.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_283.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_283.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  abort;
                }
                dialogHandle_259.SetOutput(Translate("Check the Bead tube and place Bead tube on the designated position."), "\n", Translate("The number of Bead tube is the same as the number of Extraction cartridge."));
                if( 0 == dialogHandle_259.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_259.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_259.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                dialogHandle_273.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                dialogHandle_273.ShowOutput(Translate("Check the Bead"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                {
                  loopCounter55 = 0;
                  while (No_Tip_Error_Flag == 0)
                  {
                    loopCounter55 = loopCounter55 + 1;
                    onerror goto errLabel_310 ;
                    err.Clear();
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    if (file1_SimOn == 0)
                    {
                      TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                      if (ChPatternAbort == "10000000")
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    errLabel_310 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }   /* end if from skip handler if no error */
                  }
                }
                No_Tip_Error_Flag = 0;
              }
            }
          }
        }
        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      }
      subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      MECC::TraceComment(Translate("***** Dispense Bead (w/o Binding Buffer) *****"));
      Asp_Volume = 0;
      Asp_Volume_2nd = 0;
      Asp_Volume_Remain = 0;
      Asp_Premix_Cycle = 2;
      Asp_Premix_Vol = 270;
      if (Sample_Cnt <= 48)
      {
        Loop_Disp = Sample_Cnt % 4;
        Loop_4 = Sample_Cnt / 4;
        Loop_4 = Loop_4 * 2;
        Sample_Cnt_4n = Loop_4 * 2;
        if (Loop_4 != 0)
        {
          {
            loopCounter55 = 0;
            while (No_Tip_Error_Flag == 0)
            {
              loopCounter55 = loopCounter55 + 1;
              onerror goto errLabel_311 ;
              err.Clear();
              subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (file1_SimOn == 0)
              {
                TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                if (ChPatternAbort == "11000000")
                {
                  No_Tip_Error_Flag = 1;
                }
                else
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }
              }
              else
              {
                No_Tip_Error_Flag = 1;
              }
              errLabel_311 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }   /* end if from skip handler if no error */
            }
          }
          No_Tip_Error_Flag = 0;
        }
        else
        {
          {
            loopCounter55 = 0;
            while (No_Tip_Error_Flag == 0)
            {
              loopCounter55 = loopCounter55 + 1;
              onerror goto errLabel_312 ;
              err.Clear();
              subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (file1_SimOn == 0)
              {
                TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                if (ChPatternAbort == "10000000")
                {
                  No_Tip_Error_Flag = 1;
                }
                else
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }
              }
              else
              {
                No_Tip_Error_Flag = 1;
              }
              errLabel_312 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }   /* end if from skip handler if no error */
            }
          }
          No_Tip_Error_Flag = 0;
        }
        if (Sample_Cnt <= STARMag_Remain)
        {
          if (Loop_4 != 0)
          {
            Asp_Volume = Loop_4 * para_Volume;
            Asp_Volume = Asp_Volume + 40;
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            {
              for(loopCounter1 = 0; loopCounter1 < Loop_4;)
              {
                loopCounter1 = loopCounter1 + 1;
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
            }
          }
          if (Loop_Disp != 0)
          {
            Asp_Volume = Loop_Disp * para_Volume;
            Asp_Volume = Asp_Volume + 40;
            if (Loop_4 == 0)
            {
              Asp_Premix_Vol = 270;
              Asp_Premix_Cycle = 2;
            }
            else
            {
              Asp_Premix_Vol = Asp_Volume;
              Asp_Premix_Cycle = 1;
            }
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            {
              for(loopCounter2 = 0; loopCounter2 < Loop_Disp;)
              {
                loopCounter2 = loopCounter2 + 1;
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
            }
          }
        }
        else
        {
          if (Loop_4 != 0)
          {
            if (Sample_Cnt_4n <= STARMag_Remain)
            {
              Asp_Volume = Loop_4 * para_Volume;
              Asp_Volume = Asp_Volume + 40;
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              {
                for(loopCounter1 = 0; loopCounter1 < Loop_4;)
                {
                  loopCounter1 = loopCounter1 + 1;
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
              }
            }
            else
            {
              if (Loop_4 >= STARMag_Remain)
              {
                Asp_Volume = STARMag_Remain * para_Volume + 40;
                Asp_Volume_2nd = (Loop_4 - STARMag_Remain) * para_Volume;
                Asp_Volume_Remain = Loop_4 * para_Volume + 40;
                Trace ("Asp_Volume = ", Asp_Volume);
                Trace ("Asp_Volume_2nd = ", Asp_Volume_2nd);
                Trace ("Asp_Volume_Remain = ", Asp_Volume_Remain);
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                {
                  for(loopCounter1 = 0; loopCounter1 < Loop_4;)
                  {
                    loopCounter1 = loopCounter1 + 1;
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                }
              }
              else
              {
                Asp_Volume = Loop_4 * para_Volume + 40;
                Asp_Volume_2nd = (STARMag_Remain - Loop_4) * para_Volume;
                Asp_Volume_Remain = (2 * Loop_4 - STARMag_Remain) * para_Volume + 40;
                Trace ("Asp_Volume = ", Asp_Volume);
                Trace ("Asp_Volume_2nd = ", Asp_Volume_2nd);
                Trace ("Asp_Volume_Remain = ", Asp_Volume_Remain);
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                {
                  for(loopCounter1 = 0; loopCounter1 < Loop_4;)
                  {
                    loopCounter1 = loopCounter1 + 1;
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                }
              }
            }
          }
          if (Loop_Disp != 0)
          {
            Asp_Volume = Loop_Disp * para_Volume;
            Asp_Volume = Asp_Volume + 40;
            if (Loop_4 == 0)
            {
              Asp_Premix_Vol = 270;
              Asp_Premix_Cycle = 2;
            }
            else
            {
              Asp_Premix_Vol = Asp_Volume;
              Asp_Premix_Cycle = 1;
            }
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            {
              for(loopCounter2 = 0; loopCounter2 < Loop_Disp;)
              {
                loopCounter2 = loopCounter2 + 1;
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
            }
          }
        }
        if (Loop_4 != 0)
        {
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      else
      {
        if (STARMag_Remain >= 48)
        {
          {
            loopCounter55 = 0;
            while (No_Tip_Error_Flag == 0)
            {
              loopCounter55 = loopCounter55 + 1;
              onerror goto errLabel_313 ;
              err.Clear();
              subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (file1_SimOn == 0)
              {
                TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                if (ChPatternAbort == "11000000")
                {
                  No_Tip_Error_Flag = 1;
                }
                else
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }
              }
              else
              {
                No_Tip_Error_Flag = 1;
              }
              errLabel_313 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }   /* end if from skip handler if no error */
            }
          }
          No_Tip_Error_Flag = 0;
          Asp_Volume = 24 * para_Volume;
          Asp_Volume = Asp_Volume + 40;
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          {
            for(loopCounter1 = 0; loopCounter1 < 24;)
            {
              loopCounter1 = loopCounter1 + 1;
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
          }
        }
        else
        {
          {
            loopCounter55 = 0;
            while (No_Tip_Error_Flag == 0)
            {
              loopCounter55 = loopCounter55 + 1;
              onerror goto errLabel_314 ;
              err.Clear();
              subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (file1_SimOn == 0)
              {
                TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                if (ChPatternAbort == "11000000")
                {
                  No_Tip_Error_Flag = 1;
                }
                else
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }
              }
              else
              {
                No_Tip_Error_Flag = 1;
              }
              errLabel_314 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }   /* end if from skip handler if no error */
            }
          }
          No_Tip_Error_Flag = 0;
          if (STARMag_Remain <= 24)
          {
            Asp_Volume = STARMag_Remain * para_Volume + 40;
            Asp_Volume_2nd = (24 - STARMag_Remain) * para_Volume;
            Asp_Volume_Remain = 24 * para_Volume + 40;
            Trace ("Asp_Volume = ", Asp_Volume);
            Trace ("Asp_Volume_2nd = ", Asp_Volume_2nd);
            Trace ("Asp_Volume_Remain = ", Asp_Volume_Remain);
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            {
              for(loopCounter1 = 0; loopCounter1 < 24;)
              {
                loopCounter1 = loopCounter1 + 1;
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
            }
          }
          else
          {
            Asp_Volume = 24 * para_Volume + 40;
            Asp_Volume_2nd = (STARMag_Remain - 24) * para_Volume;
            Asp_Volume_Remain = (48 - STARMag_Remain) * para_Volume + 40;
            Trace ("Asp_Volume = ", Asp_Volume);
            Trace ("Asp_Volume_2nd = ", Asp_Volume_2nd);
            Trace ("Asp_Volume_Remain = ", Asp_Volume_Remain);
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            {
              for(loopCounter1 = 0; loopCounter1 < 24;)
              {
                loopCounter1 = loopCounter1 + 1;
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
            }
          }
        }
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (STARMag_Remain > 48)
        {
          STARMag_Remain_Remain = STARMag_Remain - 48;
        }
        else
        {
          STARMag_Remain_Remain = 0;
        }
        Sample_Remain = Sample_Cnt - 48;
        Loop_Disp = Sample_Remain % 4;
        Loop_4 = Sample_Remain / 4;
        Loop_4 = Loop_4 * 2;
        Sample_Cnt_4n = Loop_4 * 2;
        if (Loop_4 != 0)
        {
          {
            loopCounter55 = 0;
            while (No_Tip_Error_Flag == 0)
            {
              loopCounter55 = loopCounter55 + 1;
              onerror goto errLabel_315 ;
              err.Clear();
              subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (file1_SimOn == 0)
              {
                TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                if (ChPatternAbort == "11000000")
                {
                  No_Tip_Error_Flag = 1;
                }
                else
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }
              }
              else
              {
                No_Tip_Error_Flag = 1;
              }
              errLabel_315 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }   /* end if from skip handler if no error */
            }
          }
          No_Tip_Error_Flag = 0;
        }
        else
        {
          {
            loopCounter55 = 0;
            while (No_Tip_Error_Flag == 0)
            {
              loopCounter55 = loopCounter55 + 1;
              onerror goto errLabel_316 ;
              err.Clear();
              subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (file1_SimOn == 0)
              {
                TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                if (ChPatternAbort == "10000000")
                {
                  No_Tip_Error_Flag = 1;
                }
                else
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }
              }
              else
              {
                No_Tip_Error_Flag = 1;
              }
              errLabel_316 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }   /* end if from skip handler if no error */
            }
          }
          No_Tip_Error_Flag = 0;
        }
        if (Sample_Remain <= STARMag_Remain_Remain)
        {
          if (Loop_4 != 0)
          {
            Asp_Volume = Loop_4 * para_Volume;
            Asp_Volume = Asp_Volume + 40;
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            {
              for(loopCounter1 = 0; loopCounter1 < Loop_4;)
              {
                loopCounter1 = loopCounter1 + 1;
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
            }
          }
          if (Loop_Disp != 0)
          {
            Asp_Volume = Loop_Disp * para_Volume;
            Asp_Volume = Asp_Volume + 40;
            if (Loop_4 == 0)
            {
              Asp_Premix_Vol = 270;
              Asp_Premix_Cycle = 2;
            }
            else
            {
              Asp_Premix_Vol = Asp_Volume;
              Asp_Premix_Cycle = 1;
            }
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            {
              for(loopCounter2 = 0; loopCounter2 < Loop_Disp;)
              {
                loopCounter2 = loopCounter2 + 1;
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
            }
          }
        }
        else
        {
          if (Loop_4 != 0)
          {
            if (Sample_Cnt_4n <= STARMag_Remain_Remain)
            {
              Asp_Volume = Loop_4 * para_Volume;
              Asp_Volume = Asp_Volume + 40;
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              {
                for(loopCounter1 = 0; loopCounter1 < Loop_4;)
                {
                  loopCounter1 = loopCounter1 + 1;
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
              }
            }
            else
            {
              if (Loop_4 >= STARMag_Remain_Remain)
              {
                Asp_Volume = STARMag_Remain_Remain * para_Volume + 40;
                Asp_Volume_2nd = (Loop_4 - STARMag_Remain_Remain) * para_Volume;
                Asp_Volume_Remain = Loop_4 * para_Volume + 40;
                Trace ("Asp_Volume = ", Asp_Volume);
                Trace ("Asp_Volume_2nd = ", Asp_Volume_2nd);
                Trace ("Asp_Volume_Remain = ", Asp_Volume_Remain);
                if (STARMag_Remain_Remain != 0)
                {
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
                else
                {
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                {
                  for(loopCounter1 = 0; loopCounter1 < Loop_4;)
                  {
                    loopCounter1 = loopCounter1 + 1;
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                }
              }
              else
              {
                Asp_Volume = Loop_4 * para_Volume + 40;
                Asp_Volume_2nd = (STARMag_Remain_Remain - Loop_4) * para_Volume;
                Asp_Volume_Remain = (2 * Loop_4 - STARMag_Remain_Remain) * para_Volume + 40;
                Trace ("Asp_Volume = ", Asp_Volume);
                Trace ("Asp_Volume_2nd = ", Asp_Volume_2nd);
                Trace ("Asp_Volume_Remain = ", Asp_Volume_Remain);
                if (STARMag_Remain_Remain != 0)
                {
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
                else
                {
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                {
                  for(loopCounter1 = 0; loopCounter1 < Loop_4;)
                  {
                    loopCounter1 = loopCounter1 + 1;
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                }
              }
            }
          }
          if (Loop_Disp != 0)
          {
            Asp_Volume = Loop_Disp * para_Volume;
            Asp_Volume = Asp_Volume + 40;
            if (Loop_4 == 0)
            {
              Asp_Premix_Vol = 270;
              Asp_Premix_Cycle = 2;
            }
            else
            {
              Asp_Premix_Vol = Asp_Volume;
              Asp_Premix_Cycle = 1;
            }
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            {
              for(loopCounter2 = 0; loopCounter2 < Loop_Disp;)
              {
                loopCounter2 = loopCounter2 + 1;
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
            }
          }
        }
        if (Loop_4 != 0)
        {
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
  }

  function Check_Tips_Thinprep( device & subInstrument, sequence & seq_All_Tips_Part, sequence & seq_300ul_Tips, variable Sample_Cnt, variable Sample_Cnt_PRODUCT_001, variable Sample_Cnt_PRODUCT_002, variable Sample_Cnt_PRODUCT_003, variable Sample_Cnt_PRODUCT_004, variable Use_All_Tips_Part, variable Use_300ul_Tips, variable Random_Access, variable file2_Code, variable file2_PCR_Remain, variable file7_PCR_Remain, variable file9_PCR_Remain, variable file11_PCR_Remain, variable file2_Set_No, variable file2_PC_No, variable file2_WTC_No, variable file2_NC_No, variable file2_SD_No, variable file7_PC_No, variable file7_WTC_No, variable file7_NC_No, variable file7_SD_No, variable file9_PC_No, variable file9_WTC_No, variable file9_NC_No, variable file9_SD_No, variable file11_PC_No, variable file11_WTC_No, variable file11_NC_No, variable file11_SD_No, variable file1_SimOn, variable STEP, variable StepChk_Ctrdg_Flag ) void {
    private dialog dialogHandle_317;
    private variable file1_No;
    private variable Return_Value;
    private variable SamplePlusControl;
    private variable Build_Step_or_Not;
    private variable file1_Enable;
    private variable TipsOnDeck_300;
    private variable file1_Sample_Cnt;
    private variable loopCounter1;
    private variable Tip_Usage_300ul;
    private variable file1_Tip_Sequence;
    private variable file1_Tip_Usage;
    private variable file1_Step_Name;
    private file file1;
    private variable TipsOnDeck_New_Part;
    private variable Tip_Usage_1ml_Part;
    private dialog dialogHandle_318;
    private dialog dialogHandle_319;
    private dialog dialogHandle_320;
    private dialog dialogHandle_321;
    private dialog dialogHandle_322;
    private dialog dialogHandle_323;
    private dialog dialogHandle_324;
    private dialog dialogHandle_325;
    private dialog dialogHandle_326;
    private dialog dialogHandle_327;
    private dialog dialogHandle_328;
    private dialog dialogHandle_329;
    MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++\nVerify Number of Tips on Deck is Enough\n+++++++++++++++++++++++++++++++++"));
    MECC::TraceComment(Translate("******* Determine how many tips are required for this method  after sample dispense of Thinprep*******"));
    MECC::TraceComment(Translate("******* Determine how many tips are on the deck after sample dispense of Thinprep*******"));
    SamplePlusControl = 0;
    file1_Sample_Cnt = StrIStr(Sample_Cnt);
    file1_Sample_Cnt = StrConcat2(Translate("_"), file1_Sample_Cnt);
    TipsOnDeck_New_Part = seq_All_Tips_Part.GetCount();
    TipsOnDeck_300 = seq_300ul_Tips.GetCount();
    file1.AddField("Tip_Sequence", file1_Tip_Sequence, hslInteger);
    file1.AddField("Step_Name", file1_Step_Name, hslString, 255);
    file1.AddField(file1_Sample_Cnt, file1_Tip_Usage, hslInteger);
    file1.AddField("Enable", file1_Enable, hslString, 255);
    file1.AddField("No", file1_No, hslInteger);
    if( 0 == file1.Open("C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls" + " " + "'Reconstructed Method$'", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls", "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (file1_Tip_Sequence == 1)
        {
          Tip_Usage_1ml_Part = Tip_Usage_1ml_Part + file1_Tip_Usage;
        }
        if (file1_Tip_Sequence == 3)
        {
          Tip_Usage_300ul = Tip_Usage_300ul + file1_Tip_Usage;
        }
        Build_Step_or_Not = StrFind(file1_Step_Name, Translate("Build"));
        if (Build_Step_or_Not != -1)
        {
          Return_Value = StrFind(file1_Enable, Translate("1st"));
          if (Return_Value != -1)
          {
            if (file1_No == 1)
            {
              SamplePlusControl = Sample_Cnt_PRODUCT_001 + file2_PC_No + file2_WTC_No + file2_NC_No + file2_SD_No;
              if (file2_PCR_Remain < SamplePlusControl)
              {
                Tip_Usage_1ml_Part = Tip_Usage_1ml_Part + file1_Tip_Usage;
              }
            }
            if (file1_No == 2)
            {
              SamplePlusControl = Sample_Cnt_PRODUCT_002 + file7_PC_No + file7_WTC_No + file7_NC_No + file7_SD_No;
              if (file7_PCR_Remain < SamplePlusControl)
              {
                Tip_Usage_1ml_Part = Tip_Usage_1ml_Part + file1_Tip_Usage;
              }
            }
            if (file1_No == 3)
            {
              SamplePlusControl = Sample_Cnt_PRODUCT_003 + file9_PC_No + file9_WTC_No + file9_NC_No + file9_SD_No;
              if (file9_PCR_Remain < SamplePlusControl)
              {
                Tip_Usage_1ml_Part = Tip_Usage_1ml_Part + file1_Tip_Usage;
              }
            }
            if (file1_No == 4)
            {
              SamplePlusControl = Sample_Cnt_PRODUCT_004 + file11_PC_No + file11_WTC_No + file11_NC_No + file11_SD_No;
              if (file11_PCR_Remain < SamplePlusControl)
              {
                Tip_Usage_1ml_Part = Tip_Usage_1ml_Part + file1_Tip_Usage;
              }
            }
          }
        }
        Return_Value = StrFind(file1_Enable, Translate("EnableTransferSamples"));
        if (Return_Value != -1)
        {
          if (file1_No == 1)
          {
            Tip_Usage_300ul = Tip_Usage_300ul - Sample_Cnt + Sample_Cnt_PRODUCT_001;
          }
          if (file1_No == 2)
          {
            Tip_Usage_300ul = Tip_Usage_300ul - Sample_Cnt + Sample_Cnt_PRODUCT_002;
          }
          if (file1_No == 3)
          {
            Tip_Usage_300ul = Tip_Usage_300ul - Sample_Cnt + Sample_Cnt_PRODUCT_003;
          }
          if (file1_No == 4)
          {
            Tip_Usage_300ul = Tip_Usage_300ul - Sample_Cnt + Sample_Cnt_PRODUCT_004;
          }
        }
        if (Tip_Usage_1ml_Part > 0)
        {
          Chk_Tip_Usage_1mL_zero = 1;
        }
        if (Tip_Usage_300ul > 0)
        {
          Chk_Tip_Usage_1mL_zero = 1;
        }
      }
    }
    if (file1_SimOn == 0)
    {
      if (STEP < 4)
      {
        if (STEP != 2)
        {
          if (Chk_Tip_Usage_1mL_zero != 0)
          {
            if (StepChk_Ctrdg_Flag > 0)
            {
              Tip_Usage_1ml_Part = Tip_Usage_1ml_Part + 1;
            }
          }
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    if (Use_All_Tips_Part > 0)
    {
      if (Use_300ul_Tips > 0)
      {
        dialogHandle_319.SetOutput(Translate("1 ml Tips Required : "), Tip_Usage_1ml_Part, Translate("  /  Current Tips Remaining : "), TipsOnDeck_New_Part, "\n", Translate("300 ul Tips Required : "), Tip_Usage_300ul, Translate("  /  Current Tips Remaining : "), TipsOnDeck_300, "\n");
        dialogHandle_319.ShowOutput(Translate("Required Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      else
      {
        dialogHandle_321.SetOutput(Translate("1 ml Tips Required : "), Tip_Usage_1ml_Part, Translate("  /  Current Tips Remaining : "), TipsOnDeck_New_Part, "\n");
        dialogHandle_321.ShowOutput(Translate("Required Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    else
    {
      if (Use_300ul_Tips > 0)
      {
        dialogHandle_320.SetOutput(Translate("300 ul Tips Required : "), Tip_Usage_300ul, Translate("  /  Current Tips Remaining : "), TipsOnDeck_300, "\n");
        dialogHandle_320.ShowOutput(Translate("Required Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    if (Use_All_Tips_Part > 0)
    {
      if (Tip_Usage_1ml_Part <= 576)
      {
        if (TipsOnDeck_New_Part < Tip_Usage_1ml_Part)
        {
          dialogHandle_328.SetOutput(Translate("There are not enough tips on the deck."), Translate(""), "\n", Translate("To process "), Sample_Cnt, Translate(" samples, you will need "), Tip_Usage_1ml_Part, Translate("ea 1000ul tips in the Tip Carrier."), "\n", Translate("Please add more tips and press 'OK' button to restart the method."));
          dialogHandle_328.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          TipCount::Edit2(seq_All_Tips_Part, Translate("All_Tips_Part_Counter"), subInstrument, 999);
          TipsOnDeck_New_Part = seq_All_Tips_Part.GetCount();
          Trace ("TipsOnDeck_New_Part = ", TipsOnDeck_New_Part);
          if (TipsOnDeck_New_Part < Tip_Usage_1ml_Part)
          {
            dialogHandle_329.SetOutput(Translate("There are not enough tips on the deck."), Translate("Method will abort."));
            if( 0 == dialogHandle_329.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_329.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_329.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
      }
      else
      {
        if (TipsOnDeck_New_Part < Tip_Usage_1ml_Part)
        {
          dialogHandle_326.SetOutput(Translate("There are not enough 1 mL tips on the deck  to ensure the current operation is completely performed."), "\n", Translate("Please add more 1 mL tips, when the instrument is stopped and alarmed."));
          dialogHandle_326.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        }
      }
    }
    if (Use_300ul_Tips > 0)
    {
      if (Tip_Usage_300ul <= 384)
      {
        if (TipsOnDeck_300 < Tip_Usage_300ul)
        {
          dialogHandle_327.SetOutput(Translate("There are not enough tips on the deck."), Translate(""), "\n", Translate("To process "), Sample_Cnt, Translate(" samples, you will need "), Tip_Usage_300ul, Translate("ea 300ul tips in the Tip Carrier."), "\n", Translate("Please add more tips and press 'OK' button to restart the method."));
          dialogHandle_327.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          TipCount::Edit2(seq_300ul_Tips, Translate("All_300ul_Tips_Counter"), subInstrument, 999);
          TipsOnDeck_300 = seq_300ul_Tips.GetCount();
          Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
          if (TipsOnDeck_300 < Tip_Usage_300ul)
          {
            dialogHandle_325.SetOutput(Translate("There are not enough tips on the deck."), Translate("Method will abort."));
            if( 0 == dialogHandle_325.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_325.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_325.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
      }
      else
      {
        if (TipsOnDeck_300 < Tip_Usage_300ul)
        {
          dialogHandle_324.SetOutput(Translate("There are not enough 300 uL tips on the deck  to ensure the current operation is completely performed."), "\n", Translate("Please add more 300 uL tips, when the instrument is stopped and alarmed."));
          dialogHandle_324.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        }
      }
    }
    if (Sample_Cnt_PRODUCT_002 == 0)
    {
      if (Use_All_Tips_Part > 0)
      {
        if (TipsOnDeck_New_Part < Tip_Usage_1ml_Part)
        {
          dialogHandle_323.SetOutput(Translate("There are not enough tips on the deck."), Translate(""), "\n", Translate("To process "), Sample_Cnt, Translate(" samples, you will need "), Tip_Usage_1ml_Part, Translate("ea 1000ul tips in the Tip Carrier."), "\n", Translate("Please add more tips and press 'OK' button to restart the method."));
          dialogHandle_323.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          TipCount::Edit2(seq_All_Tips_Part, Translate("All_Tips_Part_Counter"), subInstrument, 999);
          TipsOnDeck_New_Part = seq_All_Tips_Part.GetCount();
          Trace ("TipsOnDeck_New_Part = ", TipsOnDeck_New_Part);
          if (TipsOnDeck_New_Part < Tip_Usage_1ml_Part)
          {
            dialogHandle_318.SetOutput(Translate("There are not enough tips on the deck."), Translate("Method will abort."));
            if( 0 == dialogHandle_318.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_318.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_318.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
      }
      if (Use_300ul_Tips > 0)
      {
        if (TipsOnDeck_300 < Tip_Usage_300ul)
        {
          dialogHandle_322.SetOutput(Translate("There are not enough tips on the deck."), Translate(""), "\n", Translate("To process "), Sample_Cnt, Translate(" samples, you will need "), Tip_Usage_300ul, Translate("ea 300ul tips in the Tip Carrier."), "\n", Translate("Please add more tips and press 'OK' button to restart the method."));
          dialogHandle_322.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          TipCount::Edit2(seq_300ul_Tips, Translate("All_300ul_Tips_Counter"), subInstrument, 999);
          TipsOnDeck_300 = seq_300ul_Tips.GetCount();
          Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
          if (TipsOnDeck_300 < Tip_Usage_300ul)
          {
            dialogHandle_317.SetOutput(Translate("There are not enough tips on the deck. Method will abort."));
            if( 0 == dialogHandle_317.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_317.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_317.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
      }
    }
  }

  function Disp_Buffer_2( device & subInstrument, variable Sample_Cnt, variable Sample_Cnt_Ini, variable ChPattern_Chk, variable ChPattern_Remain, variable ChPattern_Remain2, variable para_Asp_cLLD_On, sequence & para_Asp_position, variable para_Asp_Submerge_Depth, variable para_Asp_Bottom_Height, variable para_Asp_Retract_Distance, variable para_Asp_Premix_Vol, variable para_Asp_Premix_Cycle, variable para_Asp_Premix_ASD, variable para_Asp_ADC_On, variable para_Disp_cLLD_On, sequence & para_Disp_position, variable para_Disp_Submerge_Depth, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Disp_Postmix_Vol, variable para_Disp_Postmix_Cycle, variable para_Disp_Postmix_ASD, variable para_Liquid_Class, variable para_Liquid_Class_2, sequence & para_Tips, variable para_Volume, variable para_PreAliq_cLLD_On, variable para_PreAliq_Submerge_Depth, variable para_PreAliq_Bottom_Height, variable para_PreAliq_Retract_Distance, variable para_PreAliq_Volume, variable file4_Step_Name, variable file4_Tip_Sequence, sequence & para_Asp_position_2nd, variable STARMag_Remain, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep, variable ChPattern_Chk4, variable file2_Extraction_Kit ) void {
    private variable LoopCnt_end;
    private variable loopCounter55;
    private variable TipsStillOn;
    private variable ChPatternAbort;
    private variable Remain_Sample_end;
    private variable No_Tip_Error_Flag;
    private variable loopCounter3;
    private variable fileB_Thinprep;
    No_Tip_Error_Flag = 0;
    if (file2_Extraction_Kit < 11)
    {
      LoopCnt_end = Sample_Cnt / 8;
      Remain_Sample_end = Sample_Cnt % 8;
    }
    else
    {
      if (file4_Step_Name == "Lysis_Buffer_Dispense")
      {
        LoopCnt_end = Sample_Cnt / 4;
        Remain_Sample_end = Sample_Cnt % 4;
        if (Remain_Sample_end == 1)
        {
          ChPattern_Remain = Translate("10000000");
        }
        if (Remain_Sample_end == 2)
        {
          ChPattern_Remain = Translate("11000000");
        }
        if (Remain_Sample_end == 3)
        {
          ChPattern_Remain = Translate("11100000");
        }
      }
      else
      {
        LoopCnt_end = Sample_Cnt / 8;
        Remain_Sample_end = Sample_Cnt % 8;
      }
    }
    Trace ("Disp_Volume = " , para_Volume );
    {
      for(loopCounter3 = 0; loopCounter3 < LoopCnt_end;)
      {
        loopCounter3 = loopCounter3 + 1;
        {
          loopCounter55 = 0;
          while (No_Tip_Error_Flag == 0)
          {
            loopCounter55 = loopCounter55 + 1;
            onerror goto errLabel_330 ;
            err.Clear();
            if (file2_Extraction_Kit < 11)
            {
              subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            }
            else
            {
              subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            }
            if (file1_SimOn == 0)
            {
              TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
              if (file2_Extraction_Kit < 11)
              {
                if (ChPatternAbort == "11111111")
                {
                  No_Tip_Error_Flag = 1;
                }
                else
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }
              }
              else
              {
                if (ChPatternAbort == "11110000")
                {
                  No_Tip_Error_Flag = 1;
                }
                else
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }
              }
            }
            else
            {
              No_Tip_Error_Flag = 1;
            }
            errLabel_330 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
            }   /* end if from skip handler if no error */
          }
        }
        No_Tip_Error_Flag = 0;
        if (file2_Extraction_Kit < 11)
        {
          HSLML_STAR::AntiDropletControl_1000ulChannel_On(subInstrument);
        }
        if (para_Asp_cLLD_On == 0)
        {
          if (file2_Extraction_Kit < 11)
          {
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          else
          {
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
        }
        else
        {
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        if (file2_Extraction_Kit < 11)
        {
          HSLML_STAR::AntiDropletControl_1000ulChannel_Off(subInstrument);
        }
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    if (Remain_Sample_end > 0)
    {
      {
        loopCounter55 = 0;
        while (No_Tip_Error_Flag == 0)
        {
          loopCounter55 = loopCounter55 + 1;
          onerror goto errLabel_331 ;
          err.Clear();
          subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          if (file1_SimOn == 0)
          {
            TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
            if (ChPatternAbort == ChPattern_Remain)
            {
              No_Tip_Error_Flag = 1;
            }
            else
            {
              No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
            }
          }
          else
          {
            No_Tip_Error_Flag = 1;
          }
          errLabel_331 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
          }   /* end if from skip handler if no error */
        }
      }
      No_Tip_Error_Flag = 0;
      if (file2_Extraction_Kit < 11)
      {
        HSLML_STAR::AntiDropletControl_1000ulChannel_On(subInstrument);
      }
      if (para_Asp_cLLD_On == 0)
      {
        if (file2_Extraction_Kit < 11)
        {
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
      }
      else
      {
        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      }
      if (file2_Extraction_Kit < 11)
      {
        HSLML_STAR::AntiDropletControl_1000ulChannel_Off(subInstrument);
      }
      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
  }

  function Disp_Buffer( device & subInstrument, variable Sample_Cnt, variable Sample_Cnt_Ini, variable ChPattern_Chk, variable ChPattern_Remain, variable ChPattern_Remain2, variable para_Asp_cLLD_On, sequence & para_Asp_position, variable para_Asp_Submerge_Depth, variable para_Asp_Bottom_Height, variable para_Asp_Retract_Distance, variable para_Asp_Premix_Vol, variable para_Asp_Premix_Cycle, variable para_Asp_Premix_ASD, variable para_Asp_ADC_On, variable para_Disp_cLLD_On, sequence & para_Disp_position, variable para_Disp_Submerge_Depth, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Disp_Postmix_Vol, variable para_Disp_Postmix_Cycle, variable para_Disp_Postmix_ASD, variable para_Liquid_Class, variable para_Liquid_Class_2, sequence & para_Tips, variable para_Volume, variable para_PreAliq_cLLD_On, variable para_PreAliq_Submerge_Depth, variable para_PreAliq_Bottom_Height, variable para_PreAliq_Retract_Distance, variable para_PreAliq_Volume, variable file4_Step_Name, variable file4_Tip_Sequence, sequence & para_Asp_position_2nd, variable STARMag_Remain, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep, variable ChPattern_Chk4, variable file2_Extraction_Kit, sequence seq_LB200_premix_1, sequence seq_LB200_premix_2 ) void {
    private variable Loop_LoopCnt;
    private variable preAliq_Volume_ch1;
    private variable Asp_Volume_ch4;
    private variable Asp_Volume_Extra;
    private variable preAliq_Volume_ch2;
    private variable Asp_Volume_ch5;
    private variable Disp_Multi;
    private variable Sample_Cnt_per_loop;
    private variable loopCounter30;
    private variable Sample_Cnt_Intermediate;
    private variable preAliq_Volume_ch3;
    private variable Asp_Volume_ch6;
    private variable LoopCnt_end;
    private variable CurPos;
    private variable preAliq_Volume_ch4;
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    private sequence seq_ADC_Disp_position;
    No_Tip_Error_Flag = 0;
    LoopCnt_end = Sample_Cnt / 8;
    Remain_Sample_end = Sample_Cnt % 8;
    if (para_Volume <= 490)
    {
      if (Sample_Cnt <= STARMag_Remain)
      {
        LoopCnt = 900 / para_Volume;
        Asp_Volume_Extra = 30;
        if (file4_Step_Name == "Lysis_Buffer_Dispense_b-Th")
        {
          Asp_Volume_Extra = Asp_Volume_Extra + para_Volume;
        }
        if (file4_Step_Name == "Elution_Buffer_Dispense")
        {
          Asp_Volume_Extra = Asp_Volume_Extra + para_Volume;
        }
        Case_Disp_Empty = 2;
        if (LoopCnt >= 6)
        {
          LoopCnt = 6;
        }
        else
        {
          if (LoopCnt >= 4)
          {
            LoopCnt = 4;
          }
          else
          {
            if (LoopCnt >= 3)
            {
              LoopCnt = 3;
            }
            else
            {
              if (LoopCnt < 2)
              {
                Asp_Volume_Extra = 0;
              }
              LoopCnt = 2;
              Case_Disp_Empty = 3;
            }
          }
        }
        if (file4_Tip_Sequence == 2)
        {
          Sample_Cnt_per_loop = LoopCnt * 4;
        }
        else
        {
          if (file2_Extraction_Kit >= 10)
          {
            if (file2_Extraction_Kit == 10)
            {
              if (file4_Step_Name == "Lysis_Buffer_Dispense")
              {
                Sample_Cnt_per_loop = LoopCnt * 4;
              }
              else
              {
                Sample_Cnt_per_loop = LoopCnt * 8;
              }
            }
            if (file2_Extraction_Kit == 11)
            {
              if (file4_Step_Name == "Lysis_Buffer_Dispense")
              {
                Sample_Cnt_per_loop = LoopCnt * 4;
              }
              else
              {
                if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                {
                  Sample_Cnt_per_loop = LoopCnt * 4;
                }
                else
                {
                  Sample_Cnt_per_loop = LoopCnt * 8;
                }
              }
            }
          }
          else
          {
            Sample_Cnt_per_loop = LoopCnt * 8;
          }
        }
        Loop_LoopCnt = Sample_Cnt / Sample_Cnt_per_loop;
        Remain_Sample = Sample_Cnt_per_loop * Loop_LoopCnt;
        Remain_Sample = Sample_Cnt - Remain_Sample;
        if (file4_Tip_Sequence == 2)
        {
          LoopCnt_Remain = Remain_Sample / 4;
          Re_Remain_Sample = LoopCnt_Remain * 4;
        }
        else
        {
          if (file2_Extraction_Kit >= 10)
          {
            if (file2_Extraction_Kit == 10)
            {
              if (file4_Step_Name == "Lysis_Buffer_Dispense")
              {
                LoopCnt_Remain = Remain_Sample / 4;
                Re_Remain_Sample = LoopCnt_Remain * 4;
              }
              else
              {
                LoopCnt_Remain = Remain_Sample / 8;
                Re_Remain_Sample = LoopCnt_Remain * 8;
              }
            }
            if (file2_Extraction_Kit == 11)
            {
              if (file4_Step_Name == "Lysis_Buffer_Dispense")
              {
                LoopCnt_Remain = Remain_Sample / 4;
                Re_Remain_Sample = LoopCnt_Remain * 4;
              }
              else
              {
                if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                {
                  LoopCnt_Remain = Remain_Sample / 4;
                  Re_Remain_Sample = LoopCnt_Remain * 4;
                }
                else
                {
                  LoopCnt_Remain = Remain_Sample / 8;
                  Re_Remain_Sample = LoopCnt_Remain * 8;
                }
              }
            }
          }
          else
          {
            LoopCnt_Remain = Remain_Sample / 8;
            Re_Remain_Sample = LoopCnt_Remain * 8;
          }
        }
        Re_Remain_Sample = Remain_Sample - Re_Remain_Sample;
        Disp_Multi = para_Volume * LoopCnt;
        Disp_Multi = Disp_Multi + Asp_Volume_Extra;
        Asp_Volume_ch1 = 0;
        Asp_Volume_ch2 = 0;
        Asp_Volume_ch3 = 0;
        Asp_Volume_ch4 = 0;
        Asp_Volume_ch5 = 0;
        Asp_Volume_ch6 = 0;
        Asp_Volume_ch7 = 0;
        Asp_Volume_ch8 = 0;
        preAliq_Volume_ch1 = 0;
        preAliq_Volume_ch2 = 0;
        preAliq_Volume_ch3 = 0;
        preAliq_Volume_ch4 = 0;
        preAliq_Volume_ch5 = 0;
        preAliq_Volume_ch6 = 0;
        preAliq_Volume_ch7 = 0;
        preAliq_Volume_ch8 = 0;
        if (Re_Remain_Sample == 1)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
        }
        if (Re_Remain_Sample == 2)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
          preAliq_Volume_ch2 = para_Volume;
        }
        if (Re_Remain_Sample == 3)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
          Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
          Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
          preAliq_Volume_ch2 = para_Volume;
          preAliq_Volume_ch3 = para_Volume;
        }
        if (Re_Remain_Sample == 4)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
          Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
          Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
          Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
          Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
          preAliq_Volume_ch2 = para_Volume;
          preAliq_Volume_ch3 = para_Volume;
          preAliq_Volume_ch4 = para_Volume;
        }
        if (Re_Remain_Sample == 5)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
          Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
          Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
          Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
          Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
          Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
          Asp_Volume_ch5 = Asp_Volume_ch5 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
          preAliq_Volume_ch2 = para_Volume;
          preAliq_Volume_ch3 = para_Volume;
          preAliq_Volume_ch4 = para_Volume;
          preAliq_Volume_ch5 = para_Volume;
        }
        if (Re_Remain_Sample == 6)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
          Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
          Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
          Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
          Asp_Volume_ch6 = Asp_Volume_ch6 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
          Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
          Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
          Asp_Volume_ch5 = Asp_Volume_ch5 + Asp_Volume_Extra;
          Asp_Volume_ch6 = Asp_Volume_ch6 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
          preAliq_Volume_ch2 = para_Volume;
          preAliq_Volume_ch3 = para_Volume;
          preAliq_Volume_ch4 = para_Volume;
          preAliq_Volume_ch5 = para_Volume;
          preAliq_Volume_ch6 = para_Volume;
        }
        if (Re_Remain_Sample == 7)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
          Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
          Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
          Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
          Asp_Volume_ch6 = Asp_Volume_ch6 + para_Volume;
          Asp_Volume_ch7 = Asp_Volume_ch7 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
          Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
          Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
          Asp_Volume_ch5 = Asp_Volume_ch5 + Asp_Volume_Extra;
          Asp_Volume_ch6 = Asp_Volume_ch6 + Asp_Volume_Extra;
          Asp_Volume_ch7 = Asp_Volume_ch7 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
          preAliq_Volume_ch2 = para_Volume;
          preAliq_Volume_ch3 = para_Volume;
          preAliq_Volume_ch4 = para_Volume;
          preAliq_Volume_ch5 = para_Volume;
          preAliq_Volume_ch6 = para_Volume;
          preAliq_Volume_ch7 = para_Volume;
        }
        MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
        Trace ("para_Volume = ", para_Volume);
        Trace ("LoopCnt = ", LoopCnt);
        Trace ("Asp_Volume_Extra = ", Asp_Volume_Extra);
        Trace ("Case_Disp_Empty = ", Case_Disp_Empty);
        Trace ("Sample_Cnt_per_loop = ", Sample_Cnt_per_loop);
        Trace ("Loop_LoopCnt = ", Loop_LoopCnt);
        Trace ("Remain_Sample = ", Remain_Sample);
        Trace ("LoopCnt_Remain = ", LoopCnt_Remain);
        Trace ("Re_Remain_Sample = ", Re_Remain_Sample);
        Trace ("Disp_Multi = ", Disp_Multi);
        Trace ("Asp_Volume_ch1 =", Asp_Volume_ch1);
        Trace ("Asp_Volume_ch2 =", Asp_Volume_ch2);
        Trace ("Asp_Volume_ch3 =", Asp_Volume_ch3);
        Trace ("Asp_Volume_ch4 =", Asp_Volume_ch4);
        Trace ("Asp_Volume_ch5 =", Asp_Volume_ch5);
        Trace ("Asp_Volume_ch6 =", Asp_Volume_ch6);
        Trace ("Asp_Volume_ch7 =", Asp_Volume_ch7);
        Trace ("Asp_Volume_ch8 =", Asp_Volume_ch8);
        MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
        if (file2_Extraction_Kit == 11)
        {
          if (file4_Step_Name == "Lysis_Buffer_Dispense")
          {
            {
              loopCounter55 = 0;
              while (No_Tip_Error_Flag == 0)
              {
                loopCounter55 = loopCounter55 + 1;
                onerror goto errLabel_332 ;
                err.Clear();
                subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                if (file1_SimOn == 0)
                {
                  TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                  if (ChPatternAbort == "11110000")
                  {
                    No_Tip_Error_Flag = 1;
                  }
                  else
                  {
                    No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                  }
                }
                else
                {
                  No_Tip_Error_Flag = 1;
                }
                errLabel_332 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }   /* end if from skip handler if no error */
              }
            }
            No_Tip_Error_Flag = 0;
            seq_LB200_premix_1.SetCurrentPosition(1);
            if (STARMag_Remain == 96)
            {
              LB_Premix_Vol = 1000;
            }
            else
            {
              if (STARMag_Remain > 16)
              {
                LB_Premix_Vol = 730;
              }
              else
              {
                LB_Premix_Vol = 350;
              }
            }
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          }
        }
        if (file4_Tip_Sequence == 2)
        {
          {
            loopCounter55 = 0;
            while (No_Tip_Error_Flag == 0)
            {
              loopCounter55 = loopCounter55 + 1;
              onerror goto errLabel_333 ;
              err.Clear();
              subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (file1_SimOn == 0)
              {
                TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                if (ChPatternAbort == ChPattern_Chk4)
                {
                  No_Tip_Error_Flag = 1;
                }
                else
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }
              }
              else
              {
                No_Tip_Error_Flag = 1;
              }
              errLabel_333 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }   /* end if from skip handler if no error */
            }
          }
        }
        else
        {
          {
            loopCounter55 = 0;
            while (No_Tip_Error_Flag == 0)
            {
              loopCounter55 = loopCounter55 + 1;
              onerror goto errLabel_334 ;
              err.Clear();
              if (file2_Extraction_Kit >= 10)
              {
                if (file2_Extraction_Kit == 10)
                {
                  if (file4_Step_Name == "Lysis_Buffer_Dispense")
                  {
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                  }
                  else
                  {
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                  }
                }
                if (file2_Extraction_Kit == 11)
                {
                  if (file4_Step_Name == "Lysis_Buffer_Dispense")
                  {
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                  }
                  else
                  {
                    if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                    {
                      subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    }
                    else
                    {
                      subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    }
                  }
                }
              }
              else
              {
                subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              if (file1_SimOn == 0)
              {
                TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                if (file2_Extraction_Kit >= 10)
                {
                  if (file2_Extraction_Kit == 10)
                  {
                    if (file4_Step_Name == "Lysis_Buffer_Dispense")
                    {
                      if (ChPatternAbort == ChPattern_Chk4)
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      if (ChPatternAbort == ChPattern_Chk)
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                  }
                  if (file2_Extraction_Kit == 11)
                  {
                    if (file4_Step_Name == "Lysis_Buffer_Dispense")
                    {
                      if (ChPatternAbort == ChPattern_Chk4)
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                      {
                        if (ChPatternAbort == ChPattern_Chk4)
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                      }
                      else
                      {
                        if (ChPatternAbort == ChPattern_Chk)
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                      }
                    }
                  }
                }
                else
                {
                  if (ChPatternAbort == ChPattern_Chk)
                  {
                    No_Tip_Error_Flag = 1;
                  }
                  else
                  {
                    No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                  }
                }
              }
              else
              {
                No_Tip_Error_Flag = 1;
              }
              errLabel_334 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }   /* end if from skip handler if no error */
            }
          }
        }
        No_Tip_Error_Flag = 0;
        if (Loop_LoopCnt > 0)
        {
          Trace ("*************************************");
          Trace ("Disp_Volume = " , para_Volume );
          Trace ("*************************************");
          Trace ("LoopCnt = " , LoopCnt);
          Trace ("Disp_Multi = ", Disp_Multi);
          Trace ("*************************************");
          {
            for(loopCounter1 = 0; loopCounter1 < Loop_LoopCnt;)
            {
              loopCounter1 = loopCounter1 + 1;
              if (loopCounter1 == 1)
              {
                MixCycles = 1;
                if (file2_Extraction_Kit == 11)
                {
                  if (file4_Step_Name == "Wash_Buffer_1_Dispense")
                  {
                    MixCycles = 0;
                  }
                }
              }
              else
              {
                MixCycles = 0;
                Disp_Empty = loopCounter1 % Case_Disp_Empty;
                if (Disp_Empty == 0)
                {
                  Flag_Disp_Empty = 1;
                }
                else
                {
                  Flag_Disp_Empty = 0;
                }
              }
              if (para_Asp_cLLD_On == 0)
              {
                if (file4_Tip_Sequence == 2)
                {
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
                else
                {
                  if (file2_Extraction_Kit >= 10)
                  {
                    if (file4_Step_Name == "Lysis_Buffer_Dispense")
                    {
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                    else
                    {
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                  }
                  else
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                }
              }
              else
              {
                if (file2_Extraction_Kit >= 10)
                {
                  if (file2_Extraction_Kit == 11)
                  {
                    if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                    {
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                    else
                    {
                      if (file4_Step_Name == "Lysis_Buffer_Dispense")
                      {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                      else
                      {
                        if (file4_Step_Name == "Wash_Buffer_1_Dispense")
                        {
                        if (loopCounter1 == 1)
                        {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                    }
                  }
                  else
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                }
                else
                {
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
              }
              if (file4_Step_Name == "Lysis_Buffer_Dispense_b-Th")
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              if (file4_Step_Name == "Elution_Buffer_Dispense")
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              {
                for(loopCounter30 = 0; loopCounter30 < LoopCnt;)
                {
                  loopCounter30 = loopCounter30 + 1;
                  if (para_Disp_cLLD_On == 0)
                  {
                    if (file4_Tip_Sequence == 2)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                    else
                    {
                      if (file2_Extraction_Kit >= 10)
                      {
                        if (file2_Extraction_Kit == 10)
                        {
                        if (file4_Step_Name == "Lysis_Buffer_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        }
                        if (file2_Extraction_Kit == 11)
                        {
                        if (file4_Step_Name == "Lysis_Buffer_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        else
                        {
                        if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        }
                        }
                      }
                      else
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      }
                    }
                  }
                  else
                  {
                    if (file2_Extraction_Kit == 11)
                    {
                      if (file4_Step_Name == "Lysis_Buffer_Dispense")
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      }
                      else
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      }
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                  }
                }
              }
              MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
              Trace ("Flag_Disp_Empty = ", Flag_Disp_Empty);
              MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
              if (Flag_Disp_Empty == 1)
              {
                if (Remain_Sample != 0)
                {
                  if (file4_Tip_Sequence == 2)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                  else
                  {
                    if (file2_Extraction_Kit >= 10)
                    {
                      if (file2_Extraction_Kit == 10)
                      {
                        if (file4_Step_Name == "Lysis_Buffer_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                      }
                      if (file2_Extraction_Kit == 11)
                      {
                        if (file4_Step_Name == "Lysis_Buffer_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                      }
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                  }
                }
                else
                {
                  if (loopCounter1 != Loop_LoopCnt)
                  {
                    if (file4_Tip_Sequence == 2)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                    else
                    {
                      if (file2_Extraction_Kit >= 10)
                      {
                        if (file2_Extraction_Kit == 10)
                        {
                        if (file4_Step_Name == "Lysis_Buffer_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                        if (file2_Extraction_Kit == 11)
                        {
                        if (file4_Step_Name == "Lysis_Buffer_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                        }
                      }
                      else
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                    }
                  }
                }
              }
            }
          }
        }
        if (Remain_Sample > 0)
        {
          MECC::TraceComment(Translate("****** Pipette remaining wells (if any) ******"));
          Trace ("*************************************");
          Trace ("Disp_Volume = " , para_Volume );
          Trace ("*************************************");
          Trace ("LoopCnt_Remain = " , LoopCnt_Remain);
          Trace ("Remain_Sample = ", Remain_Sample);
          Trace ("Re_Remain_Sample = ", Re_Remain_Sample);
          Trace ("Asp_Volume_ch1 = ", Asp_Volume_ch1);
          Trace ("Asp_Volume_ch2 = ", Asp_Volume_ch2);
          Trace ("Asp_Volume_ch3 = ", Asp_Volume_ch3);
          Trace ("Asp_Volume_ch4 = ", Asp_Volume_ch4);
          Trace ("Asp_Volume_ch5 =", Asp_Volume_ch5);
          Trace ("Asp_Volume_ch6 =", Asp_Volume_ch6);
          Trace ("Asp_Volume_ch7 =", Asp_Volume_ch7);
          Trace ("Asp_Volume_ch8 =", Asp_Volume_ch8);
          Trace ("*************************************");
          if (Loop_LoopCnt == 0)
          {
            MixCycles = 1;
            if (file2_Extraction_Kit == 11)
            {
              if (file4_Step_Name == "Wash_Buffer_1_Dispense")
              {
                MixCycles = 0;
              }
            }
          }
          else
          {
            MixCycles = 0;
          }
          if (LoopCnt_Remain != 0)
          {
            Disp_Multi = para_Volume * LoopCnt_Remain;
            Disp_Multi = Disp_Multi + Asp_Volume_Extra;
            if (para_Asp_cLLD_On == 0)
            {
              if (file4_Tip_Sequence == 2)
              {
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              }
              else
              {
                if (file2_Extraction_Kit >= 10)
                {
                  if (file4_Step_Name == "Lysis_Buffer_Dispense")
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                  else
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                }
                else
                {
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
              }
            }
            else
            {
              if (file2_Extraction_Kit >= 10)
              {
                if (file2_Extraction_Kit == 11)
                {
                  if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                  else
                  {
                    if (file4_Step_Name == "Lysis_Buffer_Dispense")
                    {
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                    else
                    {
                      if (file4_Step_Name == "Wash_Buffer_1_Dispense")
                      {
                        if (Loop_LoopCnt == 0)
                        {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                      }
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                  }
                }
                else
                {
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
              }
              else
              {
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              }
            }
            if (file4_Step_Name == "Lysis_Buffer_Dispense_b-Th")
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            if (file4_Step_Name == "Elution_Buffer_Dispense")
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            {
              for(loopCounter30 = 0; loopCounter30 < LoopCnt_Remain;)
              {
                loopCounter30 = loopCounter30 + 1;
                if (para_Disp_cLLD_On == 0)
                {
                  if (file4_Tip_Sequence == 2)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                  else
                  {
                    if (file2_Extraction_Kit >= 10)
                    {
                      if (file2_Extraction_Kit == 10)
                      {
                        if (file4_Step_Name == "Lysis_Buffer_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                      }
                      if (file2_Extraction_Kit == 11)
                      {
                        if (file4_Step_Name == "Lysis_Buffer_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        else
                        {
                        if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        }
                      }
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                  }
                }
                else
                {
                  if (file2_Extraction_Kit == 11)
                  {
                    if (file4_Step_Name == "Lysis_Buffer_Dispense")
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                  }
                  else
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                }
              }
            }
          }
          if (Re_Remain_Sample != 0)
          {
            {
              loopCounter2 = 0;
              while (
                 (para_Disp_position.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, para_Asp_position, 1, para_Disp_position, 1, para_Tips, 1);
                loopCounter2 = loopCounter2 + 1;
                if (para_Asp_cLLD_On == 0)
                {
                  if (file4_Tip_Sequence == 2)
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                  else
                  {
                    if (file2_Extraction_Kit >= 10)
                    {
                      if (file4_Step_Name == "Lysis_Buffer_Dispense")
                      {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                      else
                      {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                    }
                    else
                    {
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                  }
                }
                else
                {
                  if (file2_Extraction_Kit >= 10)
                  {
                    if (file2_Extraction_Kit == 11)
                    {
                      if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                      {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                      else
                      {
                        if (file4_Step_Name == "Lysis_Buffer_Dispense")
                        {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        if (file4_Step_Name == "Wash_Buffer_1_Dispense")
                        {
                        if (Loop_LoopCnt == 0)
                        {
                        if (LoopCnt_Remain == 0)
                        {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                        }
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                      }
                    }
                    else
                    {
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                  }
                  else
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                }
                if (file4_Step_Name == "Lysis_Buffer_Dispense_b-Th")
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
                if (file4_Step_Name == "Elution_Buffer_Dispense")
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
                if (para_Disp_cLLD_On == 0)
                {
                  if (file4_Tip_Sequence == 2)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                  else
                  {
                    if (file2_Extraction_Kit >= 10)
                    {
                      if (file4_Step_Name == "Lysis_Buffer_Dispense")
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      }
                      else
                      {
                        if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                      }
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                  }
                }
                else
                {
                  if (file2_Extraction_Kit == 11)
                  {
                    if (file4_Step_Name == "Lysis_Buffer_Dispense")
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                  }
                  else
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                }
                if (
                   (para_Disp_position.GetCurrentPosition() > 0 && para_Disp_position.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              para_Asp_position.SetMax(para_Asp_position.GetTotal());
              para_Disp_position.SetMax(para_Disp_position.GetTotal());
              para_Tips.SetMax(para_Tips.GetTotal());
              para_Asp_position.SetCurrentPosition(1);
              para_Disp_position.SetCurrentPosition(1);
            }
          }
        }
        if (file2_Extraction_Kit >= 10)
        {
          if (file4_Step_Name == "Lysis_Buffer_Dispense")
          {
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          if (file2_Extraction_Kit == 11)
          {
            if (file4_Step_Name == "Wash_Buffer_2_Dispense")
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
          }
        }
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      else
      {
        if (file2_Extraction_Kit == 11)
        {
          if (file4_Step_Name == "Lysis_Buffer_Dispense")
          {
            {
              loopCounter55 = 0;
              while (No_Tip_Error_Flag == 0)
              {
                loopCounter55 = loopCounter55 + 1;
                onerror goto errLabel_335 ;
                err.Clear();
                subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                if (file1_SimOn == 0)
                {
                  TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                  if (ChPatternAbort == "11110000")
                  {
                    No_Tip_Error_Flag = 1;
                  }
                  else
                  {
                    No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                  }
                }
                else
                {
                  No_Tip_Error_Flag = 1;
                }
                errLabel_335 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }   /* end if from skip handler if no error */
              }
            }
            No_Tip_Error_Flag = 0;
            seq_LB200_premix_1.SetCurrentPosition(1);
            if (STARMag_Remain == 96)
            {
              LB_Premix_Vol = 1000;
            }
            else
            {
              if (STARMag_Remain > 16)
              {
                LB_Premix_Vol = 730;
              }
              else
              {
                LB_Premix_Vol = 350;
              }
            }
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            {
              loopCounter55 = 0;
              while (No_Tip_Error_Flag == 0)
              {
                loopCounter55 = loopCounter55 + 1;
                onerror goto errLabel_336 ;
                err.Clear();
                subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                if (file1_SimOn == 0)
                {
                  TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                  if (ChPatternAbort == "11110000")
                  {
                    No_Tip_Error_Flag = 1;
                  }
                  else
                  {
                    No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                  }
                }
                else
                {
                  No_Tip_Error_Flag = 1;
                }
                errLabel_336 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }   /* end if from skip handler if no error */
              }
            }
            No_Tip_Error_Flag = 0;
            seq_LB200_premix_2.SetCurrentPosition(1);
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          }
        }
        para_Disp_position.SetCount(STARMag_Remain);
        TrcTraceSequence(para_Disp_position);
        LoopCnt = 900 / para_Volume;
        Asp_Volume_Extra = 30;
        if (file4_Step_Name == "Lysis_Buffer_Dispense_b-Th")
        {
          Asp_Volume_Extra = Asp_Volume_Extra + para_Volume;
        }
        if (file4_Step_Name == "Elution_Buffer_Dispense")
        {
          Asp_Volume_Extra = Asp_Volume_Extra + para_Volume;
        }
        Case_Disp_Empty = 2;
        if (LoopCnt >= 6)
        {
          LoopCnt = 6;
        }
        else
        {
          if (LoopCnt >= 4)
          {
            LoopCnt = 4;
          }
          else
          {
            if (LoopCnt == 3)
            {
              LoopCnt = 3;
            }
            else
            {
              if (LoopCnt < 2)
              {
                Asp_Volume_Extra = 0;
              }
              LoopCnt = 2;
              Case_Disp_Empty = 3;
            }
          }
        }
        if (file4_Tip_Sequence == 2)
        {
          Sample_Cnt_per_loop = LoopCnt * 4;
        }
        else
        {
          if (file2_Extraction_Kit >= 10)
          {
            if (file2_Extraction_Kit == 10)
            {
              if (file4_Step_Name == "Lysis_Buffer_Dispense")
              {
                Sample_Cnt_per_loop = LoopCnt * 4;
              }
              else
              {
                Sample_Cnt_per_loop = LoopCnt * 8;
              }
            }
            if (file2_Extraction_Kit == 11)
            {
              if (file4_Step_Name == "Lysis_Buffer_Dispense")
              {
                Sample_Cnt_per_loop = LoopCnt * 4;
              }
              else
              {
                if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                {
                  Sample_Cnt_per_loop = LoopCnt * 4;
                }
                else
                {
                  Sample_Cnt_per_loop = LoopCnt * 8;
                }
              }
            }
          }
          else
          {
            Sample_Cnt_per_loop = LoopCnt * 8;
          }
        }
        Loop_LoopCnt = STARMag_Remain / Sample_Cnt_per_loop;
        Loop_LoopCnt_1st = Loop_LoopCnt;
        Remain_Sample = Sample_Cnt_per_loop * Loop_LoopCnt;
        Remain_Sample = STARMag_Remain - Remain_Sample;
        if (file4_Tip_Sequence == 2)
        {
          LoopCnt_Remain = Remain_Sample / 4;
          Re_Remain_Sample = LoopCnt_Remain * 4;
        }
        else
        {
          if (file2_Extraction_Kit >= 10)
          {
            if (file2_Extraction_Kit == 10)
            {
              if (file4_Step_Name == "Lysis_Buffer_Dispense")
              {
                LoopCnt_Remain = Remain_Sample / 4;
                Re_Remain_Sample = LoopCnt_Remain * 4;
              }
              else
              {
                LoopCnt_Remain = Remain_Sample / 8;
                Re_Remain_Sample = LoopCnt_Remain * 8;
              }
            }
            if (file2_Extraction_Kit == 11)
            {
              if (file4_Step_Name == "Lysis_Buffer_Dispense")
              {
                LoopCnt_Remain = Remain_Sample / 4;
                Re_Remain_Sample = LoopCnt_Remain * 4;
              }
              else
              {
                if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                {
                  LoopCnt_Remain = Remain_Sample / 4;
                  Re_Remain_Sample = LoopCnt_Remain * 4;
                }
                else
                {
                  LoopCnt_Remain = Remain_Sample / 8;
                  Re_Remain_Sample = LoopCnt_Remain * 8;
                }
              }
            }
          }
          else
          {
            LoopCnt_Remain = Remain_Sample / 8;
            Re_Remain_Sample = LoopCnt_Remain * 8;
          }
        }
        LoopCnt_Remain_1st = LoopCnt_Remain;
        Re_Remain_Sample = Remain_Sample - Re_Remain_Sample;
        Disp_Multi = para_Volume * LoopCnt;
        Disp_Multi = Disp_Multi + Asp_Volume_Extra;
        Asp_Volume_ch1 = 0;
        Asp_Volume_ch2 = 0;
        Asp_Volume_ch3 = 0;
        Asp_Volume_ch4 = 0;
        Asp_Volume_ch5 = 0;
        Asp_Volume_ch6 = 0;
        Asp_Volume_ch7 = 0;
        Asp_Volume_ch8 = 0;
        preAliq_Volume_ch1 = 0;
        preAliq_Volume_ch2 = 0;
        preAliq_Volume_ch3 = 0;
        preAliq_Volume_ch4 = 0;
        preAliq_Volume_ch5 = 0;
        preAliq_Volume_ch6 = 0;
        preAliq_Volume_ch7 = 0;
        preAliq_Volume_ch8 = 0;
        if (Re_Remain_Sample == 1)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
        }
        if (Re_Remain_Sample == 2)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
          preAliq_Volume_ch2 = para_Volume;
        }
        if (Re_Remain_Sample == 3)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
          Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
          Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
          preAliq_Volume_ch2 = para_Volume;
          preAliq_Volume_ch3 = para_Volume;
        }
        if (Re_Remain_Sample == 4)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
          Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
          Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
          Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
          Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
          preAliq_Volume_ch2 = para_Volume;
          preAliq_Volume_ch3 = para_Volume;
          preAliq_Volume_ch4 = para_Volume;
        }
        if (Re_Remain_Sample == 5)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
          Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
          Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
          Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
          Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
          Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
          Asp_Volume_ch5 = Asp_Volume_ch5 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
          preAliq_Volume_ch2 = para_Volume;
          preAliq_Volume_ch3 = para_Volume;
          preAliq_Volume_ch4 = para_Volume;
          preAliq_Volume_ch5 = para_Volume;
        }
        if (Re_Remain_Sample == 6)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
          Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
          Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
          Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
          Asp_Volume_ch6 = Asp_Volume_ch6 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
          Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
          Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
          Asp_Volume_ch5 = Asp_Volume_ch5 + Asp_Volume_Extra;
          Asp_Volume_ch6 = Asp_Volume_ch6 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
          preAliq_Volume_ch2 = para_Volume;
          preAliq_Volume_ch3 = para_Volume;
          preAliq_Volume_ch4 = para_Volume;
          preAliq_Volume_ch5 = para_Volume;
          preAliq_Volume_ch6 = para_Volume;
        }
        if (Re_Remain_Sample == 7)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
          Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
          Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
          Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
          Asp_Volume_ch6 = Asp_Volume_ch6 + para_Volume;
          Asp_Volume_ch7 = Asp_Volume_ch7 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
          Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
          Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
          Asp_Volume_ch5 = Asp_Volume_ch5 + Asp_Volume_Extra;
          Asp_Volume_ch6 = Asp_Volume_ch6 + Asp_Volume_Extra;
          Asp_Volume_ch7 = Asp_Volume_ch7 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
          preAliq_Volume_ch2 = para_Volume;
          preAliq_Volume_ch3 = para_Volume;
          preAliq_Volume_ch4 = para_Volume;
          preAliq_Volume_ch5 = para_Volume;
          preAliq_Volume_ch6 = para_Volume;
          preAliq_Volume_ch7 = para_Volume;
        }
        MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
        Trace ("para_Volume = ", para_Volume);
        Trace ("LoopCnt = ", LoopCnt);
        Trace ("Asp_Volume_Extra = ", Asp_Volume_Extra);
        Trace ("Case_Disp_Empty = ", Case_Disp_Empty);
        Trace ("Sample_Cnt_per_loop = ", Sample_Cnt_per_loop);
        Trace ("Loop_LoopCnt = ", Loop_LoopCnt);
        Trace ("Remain_Sample = ", Remain_Sample);
        Trace ("LoopCnt_Remain = ", LoopCnt_Remain);
        Trace ("Re_Remain_Sample = ", Re_Remain_Sample);
        Trace ("Disp_Multi = ", Disp_Multi);
        Trace ("Asp_Volume_ch1 =", Asp_Volume_ch1);
        Trace ("Asp_Volume_ch2 =", Asp_Volume_ch2);
        Trace ("Asp_Volume_ch3 =", Asp_Volume_ch3);
        Trace ("Asp_Volume_ch4 =", Asp_Volume_ch4);
        Trace ("Asp_Volume_ch5 =", Asp_Volume_ch5);
        Trace ("Asp_Volume_ch6 =", Asp_Volume_ch6);
        Trace ("Asp_Volume_ch7 =", Asp_Volume_ch7);
        Trace ("Asp_Volume_ch8 =", Asp_Volume_ch8);
        MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
        if (file4_Tip_Sequence == 2)
        {
          {
            loopCounter55 = 0;
            while (No_Tip_Error_Flag == 0)
            {
              loopCounter55 = loopCounter55 + 1;
              onerror goto errLabel_337 ;
              err.Clear();
              subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (file1_SimOn == 0)
              {
                TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                if (ChPatternAbort == ChPattern_Chk4)
                {
                  No_Tip_Error_Flag = 1;
                }
                else
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }
              }
              else
              {
                No_Tip_Error_Flag = 1;
              }
              errLabel_337 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }   /* end if from skip handler if no error */
            }
          }
        }
        else
        {
          {
            loopCounter55 = 0;
            while (No_Tip_Error_Flag == 0)
            {
              loopCounter55 = loopCounter55 + 1;
              onerror goto errLabel_338 ;
              err.Clear();
              if (file2_Extraction_Kit >= 10)
              {
                if (file2_Extraction_Kit == 10)
                {
                  if (file4_Step_Name == "Lysis_Buffer_Dispense")
                  {
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                  }
                  else
                  {
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                  }
                }
                if (file2_Extraction_Kit == 11)
                {
                  if (file4_Step_Name == "Lysis_Buffer_Dispense")
                  {
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                  }
                  else
                  {
                    if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                    {
                      subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    }
                    else
                    {
                      subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    }
                  }
                }
              }
              else
              {
                subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              }
              if (file1_SimOn == 0)
              {
                TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                if (file2_Extraction_Kit >= 10)
                {
                  if (file2_Extraction_Kit == 10)
                  {
                    if (file4_Step_Name == "Lysis_Buffer_Dispense")
                    {
                      if (ChPatternAbort == ChPattern_Chk4)
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      if (ChPatternAbort == ChPattern_Chk)
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                  }
                  if (file2_Extraction_Kit == 11)
                  {
                    if (file4_Step_Name == "Lysis_Buffer_Dispense")
                    {
                      if (ChPatternAbort == ChPattern_Chk4)
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                      {
                        if (ChPatternAbort == ChPattern_Chk4)
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                      }
                      else
                      {
                        if (ChPatternAbort == ChPattern_Chk)
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                      }
                    }
                  }
                }
                else
                {
                  if (ChPatternAbort == ChPattern_Chk)
                  {
                    No_Tip_Error_Flag = 1;
                  }
                  else
                  {
                    No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                  }
                }
              }
              else
              {
                No_Tip_Error_Flag = 1;
              }
              errLabel_338 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }   /* end if from skip handler if no error */
            }
          }
        }
        No_Tip_Error_Flag = 0;
        Sum_loopcounter = 1;
        if (Loop_LoopCnt > 0)
        {
          Trace ("*************************************");
          Trace ("Disp_Volume = " , para_Volume );
          Trace ("*************************************");
          Trace ("LoopCnt = " , LoopCnt);
          Trace ("Disp_Multi = ", Disp_Multi);
          Trace ("*************************************");
          {
            for(loopCounter1 = 0; loopCounter1 < Loop_LoopCnt;)
            {
              loopCounter1 = loopCounter1 + 1;
              if (loopCounter1 == 1)
              {
                MixCycles = 1;
                if (file2_Extraction_Kit == 11)
                {
                  if (file4_Step_Name == "Wash_Buffer_1_Dispense")
                  {
                    MixCycles = 0;
                  }
                }
              }
              else
              {
                MixCycles = 0;
              }
              Disp_Empty = Sum_loopcounter % Case_Disp_Empty;
              if (Disp_Empty == 0)
              {
                Flag_Disp_Empty = 1;
              }
              else
              {
                Flag_Disp_Empty = 0;
              }
              MECC::TraceComment(Translate("1111111111111111111111111111111111111111111111111111111\n1111111111111111111111111111111111111111111111111111111"));
              Trace ("Sum_loopcounter = ", Sum_loopcounter);
              Trace ("Flag_Disp_Empty = ", Flag_Disp_Empty);
              MECC::TraceComment(Translate("1111111111111111111111111111111111111111111111111111111\n1111111111111111111111111111111111111111111111111111111"));
              if (para_Asp_cLLD_On == 0)
              {
                if (file4_Tip_Sequence == 2)
                {
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
                else
                {
                  if (file2_Extraction_Kit >= 10)
                  {
                    if (file4_Step_Name == "Lysis_Buffer_Dispense")
                    {
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                    else
                    {
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                  }
                  else
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                }
              }
              else
              {
                if (file2_Extraction_Kit == 11)
                {
                  if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                  else
                  {
                    if (file4_Step_Name == "Lysis_Buffer_Dispense")
                    {
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                    else
                    {
                      if (file4_Step_Name == "Wash_Buffer_1_Dispense")
                      {
                        if (loopCounter1 == 1)
                        {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                      }
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                  }
                }
                else
                {
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
              }
              if (file4_Step_Name == "Lysis_Buffer_Dispense_b-Th")
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              if (file4_Step_Name == "Elution_Buffer_Dispense")
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              {
                for(loopCounter30 = 0; loopCounter30 < LoopCnt;)
                {
                  loopCounter30 = loopCounter30 + 1;
                  if (para_Disp_cLLD_On == 0)
                  {
                    if (file4_Tip_Sequence == 2)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                    else
                    {
                      if (file2_Extraction_Kit >= 10)
                      {
                        if (file4_Step_Name == "Lysis_Buffer_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        else
                        {
                        if (file2_Extraction_Kit == 11)
                        {
                        if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        }
                      }
                      else
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      }
                    }
                  }
                  else
                  {
                    if (file2_Extraction_Kit == 11)
                    {
                      if (file4_Step_Name == "Lysis_Buffer_Dispense")
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      }
                      else
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      }
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                  }
                }
              }
              if (Flag_Disp_Empty == 1)
              {
                if (file4_Tip_Sequence == 2)
                {
                  if (Remain_Sample != 0)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                  else
                  {
                    if (loopCounter1 != Loop_LoopCnt)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                  }
                }
                else
                {
                  if (file2_Extraction_Kit >= 10)
                  {
                    if (file4_Step_Name == "Lysis_Buffer_Dispense")
                    {
                      if (Remain_Sample != 0)
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                      else
                      {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                      }
                    }
                    else
                    {
                      if (file2_Extraction_Kit == 11)
                      {
                        if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                        {
                        if (Remain_Sample != 0)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                        }
                        else
                        {
                        if (Remain_Sample != 0)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                        }
                      }
                      else
                      {
                        if (Remain_Sample != 0)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                      }
                    }
                  }
                  else
                  {
                    if (Remain_Sample != 0)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                    else
                    {
                      if (loopCounter1 != Loop_LoopCnt)
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                    }
                  }
                }
              }
              Sum_loopcounter = Sum_loopcounter + 1;
            }
          }
        }
        if (Remain_Sample > 0)
        {
          MECC::TraceComment(Translate("****** Pipette remaining wells (if any) ******"));
          Trace ("*************************************");
          Trace ("Disp_Volume = " , para_Volume );
          Trace ("*************************************");
          Trace ("LoopCnt_Remain = " , LoopCnt_Remain);
          Trace ("Remain_Sample = ", Remain_Sample);
          Trace ("Re_Remain_Sample = ", Re_Remain_Sample);
          Trace ("Asp_Volume_ch1 = ", Asp_Volume_ch1);
          Trace ("Asp_Volume_ch2 = ", Asp_Volume_ch2);
          Trace ("Asp_Volume_ch3 = ", Asp_Volume_ch3);
          Trace ("Asp_Volume_ch4 = ", Asp_Volume_ch4);
          Trace ("Asp_Volume_ch5 =", Asp_Volume_ch5);
          Trace ("Asp_Volume_ch6 =", Asp_Volume_ch6);
          Trace ("Asp_Volume_ch7 =", Asp_Volume_ch7);
          Trace ("Asp_Volume_ch8 =", Asp_Volume_ch8);
          Trace ("*************************************");
          if (Loop_LoopCnt == 0)
          {
            MixCycles = 1;
            if (file2_Extraction_Kit == 11)
            {
              if (file4_Step_Name == "Wash_Buffer_1_Dispense")
              {
                MixCycles = 0;
              }
            }
          }
          else
          {
            MixCycles = 0;
          }
          if (LoopCnt_Remain != 0)
          {
            Disp_Empty = Sum_loopcounter % Case_Disp_Empty;
            if (Disp_Empty == 0)
            {
              Flag_Disp_Empty = 1;
            }
            else
            {
              Flag_Disp_Empty = 0;
            }
            MECC::TraceComment(Translate("222222222222222222222222222222222222222222222222222222222\n222222222222222222222222222222222222222222222222222222222"));
            Trace ("Sum_loopcounter = ", Sum_loopcounter);
            Trace ("Flag_Disp_Empty = ", Flag_Disp_Empty);
            MECC::TraceComment(Translate("222222222222222222222222222222222222222222222222222222222\n222222222222222222222222222222222222222222222222222222222"));
            Disp_Multi = para_Volume * LoopCnt_Remain;
            Disp_Multi = Disp_Multi + Asp_Volume_Extra;
            if (para_Asp_cLLD_On == 0)
            {
              if (file4_Tip_Sequence == 2)
              {
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              }
              else
              {
                if (file2_Extraction_Kit >= 10)
                {
                  if (file4_Step_Name == "Lysis_Buffer_Dispense")
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                  else
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                }
                else
                {
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
              }
            }
            else
            {
              if (file2_Extraction_Kit == 11)
              {
                if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                {
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
                else
                {
                  if (file4_Step_Name == "Lysis_Buffer_Dispense")
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                  else
                  {
                    if (file4_Step_Name == "Wash_Buffer_1_Dispense")
                    {
                      if (Loop_LoopCnt == 0)
                      {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                    }
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                }
              }
              else
              {
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              }
            }
            if (file4_Step_Name == "Lysis_Buffer_Dispense_b-Th")
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            if (file4_Step_Name == "Elution_Buffer_Dispense")
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            {
              for(loopCounter30 = 0; loopCounter30 < LoopCnt_Remain;)
              {
                loopCounter30 = loopCounter30 + 1;
                if (para_Disp_cLLD_On == 0)
                {
                  if (file4_Tip_Sequence == 2)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                  else
                  {
                    if (file2_Extraction_Kit >= 10)
                    {
                      if (file4_Step_Name == "Lysis_Buffer_Dispense")
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      }
                      else
                      {
                        if (file2_Extraction_Kit == 11)
                        {
                        if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                      }
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                  }
                }
                else
                {
                  if (file2_Extraction_Kit == 11)
                  {
                    if (file4_Step_Name == "Lysis_Buffer_Dispense")
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                  }
                  else
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                }
              }
            }
            if (Flag_Disp_Empty == 1)
            {
              if (file4_Tip_Sequence == 2)
              {
                if (Remain_Sample != 0)
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
                else
                {
                  if (loopCounter1 != Loop_LoopCnt)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                }
              }
              else
              {
                if (file2_Extraction_Kit >= 10)
                {
                  if (file4_Step_Name == "Lysis_Buffer_Dispense")
                  {
                    if (Remain_Sample != 0)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                    else
                    {
                      if (loopCounter1 != Loop_LoopCnt)
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                    }
                  }
                  else
                  {
                    if (file2_Extraction_Kit == 11)
                    {
                      if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                      {
                        if (Remain_Sample != 0)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                      }
                      else
                      {
                        if (Remain_Sample != 0)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                      }
                    }
                    else
                    {
                      if (Remain_Sample != 0)
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                      else
                      {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                      }
                    }
                  }
                }
                else
                {
                  if (Remain_Sample != 0)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                  else
                  {
                    if (loopCounter1 != Loop_LoopCnt)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                  }
                }
              }
            }
            Sum_loopcounter = Sum_loopcounter + 1;
          }
          if (Re_Remain_Sample != 0)
          {
            Disp_Empty = Sum_loopcounter % Case_Disp_Empty;
            if (Disp_Empty == 0)
            {
              Flag_Disp_Empty = 1;
            }
            else
            {
              Flag_Disp_Empty = 0;
            }
            MECC::TraceComment(Translate("333333333333333333333333333333333333333333333333333\n333333333333333333333333333333333333333333333333333"));
            Trace ("Sum_loopcounter = ", Sum_loopcounter);
            Trace ("Flag_Disp_Empty = ", Flag_Disp_Empty);
            MECC::TraceComment(Translate("333333333333333333333333333333333333333333333333333\n333333333333333333333333333333333333333333333333333"));
            {
              loopCounter2 = 0;
              while (
                 (para_Disp_position.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, para_Asp_position, 1, para_Disp_position, 1, para_Tips, 1);
                loopCounter2 = loopCounter2 + 1;
                if (para_Asp_cLLD_On == 0)
                {
                  if (file4_Tip_Sequence == 2)
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                  else
                  {
                    if (file2_Extraction_Kit >= 10)
                    {
                      if (file4_Step_Name == "Lysis_Buffer_Dispense")
                      {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                      else
                      {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                    }
                    else
                    {
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                  }
                }
                else
                {
                  if (file2_Extraction_Kit == 11)
                  {
                    if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                    {
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                    else
                    {
                      if (file4_Step_Name == "Lysis_Buffer_Dispense")
                      {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                      else
                      {
                        if (file4_Step_Name == "Wash_Buffer_1_Dispense")
                        {
                        if (Loop_LoopCnt == 0)
                        {
                        if (LoopCnt_Remain == 0)
                        {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                        }
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                    }
                  }
                  else
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                }
                if (file4_Step_Name == "Lysis_Buffer_Dispense_b-Th")
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
                if (file4_Step_Name == "Elution_Buffer_Dispense")
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
                if (para_Disp_cLLD_On == 0)
                {
                  if (file4_Tip_Sequence == 2)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                  else
                  {
                    if (file2_Extraction_Kit >= 10)
                    {
                      if (file4_Step_Name == "Lysis_Buffer_Dispense")
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      }
                      else
                      {
                        if (file2_Extraction_Kit == 11)
                        {
                        if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                      }
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                  }
                }
                else
                {
                  if (file2_Extraction_Kit == 11)
                  {
                    if (file4_Step_Name == "Lysis_Buffer_Dispense")
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                  }
                  else
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                }
                if (
                   (para_Disp_position.GetCurrentPosition() > 0 && para_Disp_position.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              para_Asp_position.SetMax(para_Asp_position.GetTotal());
              para_Disp_position.SetMax(para_Disp_position.GetTotal());
              para_Tips.SetMax(para_Tips.GetTotal());
              para_Asp_position.SetCurrentPosition(1);
              para_Disp_position.SetCurrentPosition(1);
            }
            if (Flag_Disp_Empty == 1)
            {
              if (file4_Tip_Sequence == 2)
              {
                if (Remain_Sample != 0)
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
                else
                {
                  if (loopCounter1 != Loop_LoopCnt)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                }
              }
              else
              {
                if (file2_Extraction_Kit >= 10)
                {
                  if (file4_Step_Name == "Lysis_Buffer_Dispense")
                  {
                    if (Remain_Sample != 0)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                    else
                    {
                      if (loopCounter1 != Loop_LoopCnt)
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                    }
                  }
                  else
                  {
                    if (file2_Extraction_Kit == 11)
                    {
                      if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                      {
                        if (Remain_Sample != 0)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                      }
                      else
                      {
                        if (Remain_Sample != 0)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                      }
                    }
                    else
                    {
                      if (Remain_Sample != 0)
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                      else
                      {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                      }
                    }
                  }
                }
                else
                {
                  if (Remain_Sample != 0)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                  else
                  {
                    if (loopCounter1 != Loop_LoopCnt)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                  }
                }
              }
            }
            Sum_loopcounter = Sum_loopcounter + 1;
          }
        }
        Intermediate_Criteria = Sample_Cnt - STARMag_Remain;
        if (file4_Tip_Sequence == 2)
        {
          if (Intermediate_Criteria > 3)
          {
            if (Re_Remain_Sample != 0)
            {
              CurPos = STARMag_Remain + 1;
              EndPos = 4 - Re_Remain_Sample;
              EndPos = EndPos + STARMag_Remain;
              para_Disp_position.SetCount(EndPos);
              para_Disp_position.SetCurrentPosition(CurPos);
              TrcTraceSequence(para_Disp_position);
              Sample_Cnt_Intermediate = 4 - Re_Remain_Sample;
              LoopCnt = 900 / para_Volume;
              Asp_Volume_Extra = 30;
              Case_Disp_Empty = 2;
              if (LoopCnt >= 6)
              {
                LoopCnt = 6;
              }
              else
              {
                if (LoopCnt >= 4)
                {
                  LoopCnt = 4;
                }
                else
                {
                  if (LoopCnt >= 3)
                  {
                    LoopCnt = 3;
                  }
                  else
                  {
                    if (LoopCnt < 2)
                    {
                      Asp_Volume_Extra = 0;
                    }
                    LoopCnt = 2;
                    Case_Disp_Empty = 3;
                  }
                }
              }
              Asp_Volume_ch1 = 0;
              Asp_Volume_ch2 = 0;
              Asp_Volume_ch3 = 0;
              Asp_Volume_ch4 = 0;
              Asp_Volume_ch5 = 0;
              Asp_Volume_ch6 = 0;
              Asp_Volume_ch7 = 0;
              Asp_Volume_ch8 = 0;
              if (Sample_Cnt_Intermediate == 1)
              {
                Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
              }
              if (Sample_Cnt_Intermediate == 2)
              {
                Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
              }
              if (Sample_Cnt_Intermediate == 3)
              {
                Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
              }
              if (Sample_Cnt_Intermediate == 4)
              {
                Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
                Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
              }
              if (Sample_Cnt_Intermediate == 5)
              {
                Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
              }
              if (Sample_Cnt_Intermediate == 6)
              {
                Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
              }
              if (Sample_Cnt_Intermediate == 7)
              {
                Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
                Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
              }
              MECC::TraceComment(Translate("****** Pipette remaining wells (if any) ******"));
              MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
              Trace ("*************************************");
              Trace ("Disp_Volume = " , para_Volume );
              Trace ("*************************************");
              Trace ("Sample_Cnt_Intermediate = ", Sample_Cnt_Intermediate);
              Trace ("Asp_Volume_ch1 = ", Asp_Volume_ch1);
              Trace ("Asp_Volume_ch2 = ", Asp_Volume_ch2);
              Trace ("Asp_Volume_ch3 = ", Asp_Volume_ch3);
              Trace ("Asp_Volume_ch4 = ", Asp_Volume_ch4);
              Trace ("Asp_Volume_ch5 =", Asp_Volume_ch5);
              Trace ("Asp_Volume_ch6 =", Asp_Volume_ch6);
              Trace ("Asp_Volume_ch7 =", Asp_Volume_ch7);
              Trace ("Asp_Volume_ch8 =", Asp_Volume_ch8);
              Trace ("*************************************");
              MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
              if (Loop_LoopCnt == 0)
              {
                MixCycles = 1;
              }
              else
              {
                MixCycles = 0;
              }
              Disp_Empty = Sum_loopcounter % Case_Disp_Empty;
              if (Disp_Empty == 0)
              {
                Flag_Disp_Empty = 1;
              }
              else
              {
                Flag_Disp_Empty = 0;
              }
              MECC::TraceComment(Translate("44444444444444444444444444444444444444444444444\n44444444444444444444444444444444444444444444444"));
              Trace ("Sum_loopcounter = ", Sum_loopcounter);
              Trace ("Flag_Disp_Empty = ", Flag_Disp_Empty);
              MECC::TraceComment(Translate("44444444444444444444444444444444444444444444444\n44444444444444444444444444444444444444444444444"));
              {
                loopCounter2 = 0;
                while (
                   (para_Disp_position.GetCurrentPosition() > 0)
                )
                {
                  AlignSequences(hslTrue, para_Disp_position, 1, para_Tips, 1, para_Asp_position_2nd, 1);
                  loopCounter2 = loopCounter2 + 1;
                  if (para_Asp_cLLD_On == 0)
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    if (file2_Extraction_Kit >= 10)
                    {
                      if (file4_Step_Name == "Lysis_Buffer_Dispense")
                      {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                    }
                  }
                  else
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                  if (para_Disp_cLLD_On == 0)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                  else
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                  if (
                     (para_Disp_position.GetCurrentPosition() > 0 && para_Disp_position.GetMax() == 0 )
                  )
                  { MECC::EndlessSequenceLoopWarning(GetFileName()); }
                }
                para_Disp_position.SetMax(para_Disp_position.GetTotal());
                para_Tips.SetMax(para_Tips.GetTotal());
                para_Asp_position_2nd.SetMax(para_Asp_position_2nd.GetTotal());
                para_Disp_position.SetCurrentPosition(1);
                para_Asp_position_2nd.SetCurrentPosition(1);
              }
              if (Flag_Disp_Empty == 1)
              {
                if (Remain_Sample != 0)
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
                else
                {
                  if (loopCounter1 != Loop_LoopCnt)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                }
              }
              Sum_loopcounter = Sum_loopcounter + 1;
              Sample_Cnt_2nd = Sample_Cnt - STARMag_Remain;
              Sample_Cnt_2nd = Sample_Cnt_2nd - Sample_Cnt_Intermediate;
            }
            else
            {
              EndPos = STARMag_Remain;
              Sample_Cnt_2nd = Sample_Cnt - STARMag_Remain;
            }
          }
          else
          {
            EndPos = STARMag_Remain;
            Sample_Cnt_2nd = Sample_Cnt - STARMag_Remain;
          }
        }
        else
        {
          if (file2_Extraction_Kit >= 10)
          {
            if (file4_Step_Name == "Lysis_Buffer_Dispense")
            {
              if (Intermediate_Criteria > 3)
              {
                if (Re_Remain_Sample != 0)
                {
                  CurPos = STARMag_Remain + 1;
                  EndPos = 4 - Re_Remain_Sample;
                  EndPos = EndPos + STARMag_Remain;
                  para_Disp_position.SetCount(EndPos);
                  para_Disp_position.SetCurrentPosition(CurPos);
                  TrcTraceSequence(para_Disp_position);
                  Sample_Cnt_Intermediate = 4 - Re_Remain_Sample;
                  LoopCnt = 900 / para_Volume;
                  Asp_Volume_Extra = 30;
                  Case_Disp_Empty = 2;
                  if (LoopCnt >= 6)
                  {
                    LoopCnt = 6;
                  }
                  else
                  {
                    if (LoopCnt >= 4)
                    {
                      LoopCnt = 4;
                    }
                    else
                    {
                      if (LoopCnt >= 3)
                      {
                        LoopCnt = 3;
                      }
                      else
                      {
                        if (LoopCnt < 2)
                        {
                        Asp_Volume_Extra = 0;
                        }
                        LoopCnt = 2;
                        Case_Disp_Empty = 3;
                      }
                    }
                  }
                  Asp_Volume_ch1 = 0;
                  Asp_Volume_ch2 = 0;
                  Asp_Volume_ch3 = 0;
                  Asp_Volume_ch4 = 0;
                  Asp_Volume_ch5 = 0;
                  Asp_Volume_ch6 = 0;
                  Asp_Volume_ch7 = 0;
                  Asp_Volume_ch8 = 0;
                  if (Sample_Cnt_Intermediate == 1)
                  {
                    Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                    Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                  }
                  if (Sample_Cnt_Intermediate == 2)
                  {
                    Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                    Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                    Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                    Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                  }
                  if (Sample_Cnt_Intermediate == 3)
                  {
                    Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                    Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                    Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                    Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                    Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                    Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                  }
                  if (Sample_Cnt_Intermediate == 4)
                  {
                    Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                    Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                    Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                    Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
                    Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                    Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                    Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                    Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
                  }
                  if (Sample_Cnt_Intermediate == 5)
                  {
                    Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                    Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                    Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                    Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                    Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                    Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                    Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                    Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                  }
                  if (Sample_Cnt_Intermediate == 6)
                  {
                    Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                    Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                    Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                    Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                    Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                    Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                    Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                    Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                    Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                  }
                  if (Sample_Cnt_Intermediate == 7)
                  {
                    Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                    Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                    Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                    Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                    Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                    Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                    Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
                    Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                    Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                    Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                    Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
                  }
                  MECC::TraceComment(Translate("****** Pipette remaining wells (if any) ******"));
                  MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
                  Trace ("*************************************");
                  Trace ("Disp_Volume = " , para_Volume );
                  Trace ("*************************************");
                  Trace ("Sample_Cnt_Intermediate = ", Sample_Cnt_Intermediate);
                  Trace ("Asp_Volume_ch1 = ", Asp_Volume_ch1);
                  Trace ("Asp_Volume_ch2 = ", Asp_Volume_ch2);
                  Trace ("Asp_Volume_ch3 = ", Asp_Volume_ch3);
                  Trace ("Asp_Volume_ch4 = ", Asp_Volume_ch4);
                  Trace ("Asp_Volume_ch5 =", Asp_Volume_ch5);
                  Trace ("Asp_Volume_ch6 =", Asp_Volume_ch6);
                  Trace ("Asp_Volume_ch7 =", Asp_Volume_ch7);
                  Trace ("Asp_Volume_ch8 =", Asp_Volume_ch8);
                  Trace ("*************************************");
                  MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
                  if (Loop_LoopCnt == 0)
                  {
                    MixCycles = 1;
                  }
                  else
                  {
                    MixCycles = 0;
                  }
                  Disp_Empty = Sum_loopcounter % Case_Disp_Empty;
                  if (Disp_Empty == 0)
                  {
                    Flag_Disp_Empty = 1;
                  }
                  else
                  {
                    Flag_Disp_Empty = 0;
                  }
                  MECC::TraceComment(Translate("44444444444444444444444444444444444444444444444\n44444444444444444444444444444444444444444444444"));
                  Trace ("Sum_loopcounter = ", Sum_loopcounter);
                  Trace ("Flag_Disp_Empty = ", Flag_Disp_Empty);
                  MECC::TraceComment(Translate("44444444444444444444444444444444444444444444444\n44444444444444444444444444444444444444444444444"));
                  {
                    loopCounter2 = 0;
                    while (
                       (para_Disp_position.GetCurrentPosition() > 0)
                    )
                    {
                      AlignSequences(hslTrue, para_Disp_position, 1, para_Tips, 1, para_Asp_position_2nd, 1);
                      loopCounter2 = loopCounter2 + 1;
                      if (para_Asp_cLLD_On == 0)
                      {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                      else
                      {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                      if (para_Disp_cLLD_On == 0)
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      }
                      else
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      }
                      if (
                         (para_Disp_position.GetCurrentPosition() > 0 && para_Disp_position.GetMax() == 0 )
                      )
                      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
                    }
                    para_Disp_position.SetMax(para_Disp_position.GetTotal());
                    para_Tips.SetMax(para_Tips.GetTotal());
                    para_Asp_position_2nd.SetMax(para_Asp_position_2nd.GetTotal());
                    para_Disp_position.SetCurrentPosition(1);
                    para_Asp_position_2nd.SetCurrentPosition(1);
                  }
                  if (Flag_Disp_Empty == 1)
                  {
                    if (Remain_Sample != 0)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                    else
                    {
                      if (loopCounter1 != Loop_LoopCnt)
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                    }
                  }
                  Sum_loopcounter = Sum_loopcounter + 1;
                  Sample_Cnt_2nd = Sample_Cnt - STARMag_Remain;
                  Sample_Cnt_2nd = Sample_Cnt_2nd - Sample_Cnt_Intermediate;
                }
                else
                {
                  EndPos = STARMag_Remain;
                  Sample_Cnt_2nd = Sample_Cnt - STARMag_Remain;
                }
              }
              else
              {
                EndPos = STARMag_Remain;
                Sample_Cnt_2nd = Sample_Cnt - STARMag_Remain;
              }
            }
            else
            {
              if (file2_Extraction_Kit == 11)
              {
                if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                {
                  if (Intermediate_Criteria > 3)
                  {
                    if (Re_Remain_Sample != 0)
                    {
                      CurPos = STARMag_Remain + 1;
                      EndPos = 4 - Re_Remain_Sample;
                      EndPos = EndPos + STARMag_Remain;
                      para_Disp_position.SetCount(EndPos);
                      para_Disp_position.SetCurrentPosition(CurPos);
                      TrcTraceSequence(para_Disp_position);
                      Sample_Cnt_Intermediate = 4 - Re_Remain_Sample;
                      LoopCnt = 900 / para_Volume;
                      Asp_Volume_Extra = 30;
                      Case_Disp_Empty = 2;
                      if (LoopCnt >= 6)
                      {
                        LoopCnt = 6;
                      }
                      else
                      {
                        if (LoopCnt >= 4)
                        {
                        LoopCnt = 4;
                        }
                        else
                        {
                        if (LoopCnt >= 3)
                        {
                        LoopCnt = 3;
                        }
                        else
                        {
                        if (LoopCnt < 2)
                        {
                        Asp_Volume_Extra = 0;
                        }
                        LoopCnt = 2;
                        Case_Disp_Empty = 3;
                        }
                        }
                      }
                      Asp_Volume_ch1 = 0;
                      Asp_Volume_ch2 = 0;
                      Asp_Volume_ch3 = 0;
                      Asp_Volume_ch4 = 0;
                      Asp_Volume_ch5 = 0;
                      Asp_Volume_ch6 = 0;
                      Asp_Volume_ch7 = 0;
                      Asp_Volume_ch8 = 0;
                      if (Sample_Cnt_Intermediate == 1)
                      {
                        Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                        Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                      }
                      if (Sample_Cnt_Intermediate == 2)
                      {
                        Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                        Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                      }
                      if (Sample_Cnt_Intermediate == 3)
                      {
                        Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                        Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                      }
                      if (Sample_Cnt_Intermediate == 4)
                      {
                        Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                        Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
                        Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                        Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
                      }
                      if (Sample_Cnt_Intermediate == 5)
                      {
                        Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                        Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                        Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                      }
                      if (Sample_Cnt_Intermediate == 6)
                      {
                        Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                        Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                        Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                      }
                      if (Sample_Cnt_Intermediate == 7)
                      {
                        Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                        Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                        Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
                        Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                        Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
                      }
                      MECC::TraceComment(Translate("****** Pipette remaining wells (if any) ******"));
                      MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
                      Trace ("*************************************");
                      Trace ("Disp_Volume = " , para_Volume );
                      Trace ("*************************************");
                      Trace ("Sample_Cnt_Intermediate = ", Sample_Cnt_Intermediate);
                      Trace ("Asp_Volume_ch1 = ", Asp_Volume_ch1);
                      Trace ("Asp_Volume_ch2 = ", Asp_Volume_ch2);
                      Trace ("Asp_Volume_ch3 = ", Asp_Volume_ch3);
                      Trace ("Asp_Volume_ch4 = ", Asp_Volume_ch4);
                      Trace ("Asp_Volume_ch5 =", Asp_Volume_ch5);
                      Trace ("Asp_Volume_ch6 =", Asp_Volume_ch6);
                      Trace ("Asp_Volume_ch7 =", Asp_Volume_ch7);
                      Trace ("Asp_Volume_ch8 =", Asp_Volume_ch8);
                      Trace ("*************************************");
                      MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
                      if (Loop_LoopCnt == 0)
                      {
                        MixCycles = 1;
                      }
                      else
                      {
                        MixCycles = 0;
                      }
                      Disp_Empty = Sum_loopcounter % Case_Disp_Empty;
                      if (Disp_Empty == 0)
                      {
                        Flag_Disp_Empty = 1;
                      }
                      else
                      {
                        Flag_Disp_Empty = 0;
                      }
                      MECC::TraceComment(Translate("44444444444444444444444444444444444444444444444\n44444444444444444444444444444444444444444444444"));
                      Trace ("Sum_loopcounter = ", Sum_loopcounter);
                      Trace ("Flag_Disp_Empty = ", Flag_Disp_Empty);
                      MECC::TraceComment(Translate("44444444444444444444444444444444444444444444444\n44444444444444444444444444444444444444444444444"));
                      {
                        loopCounter2 = 0;
                        while (
                           (para_Disp_position.GetCurrentPosition() > 0)
                        )
                        {
                        AlignSequences(hslTrue, para_Disp_position, 1, para_Tips, 1, para_Asp_position_2nd, 1);
                        loopCounter2 = loopCounter2 + 1;
                        if (para_Asp_cLLD_On == 0)
                        {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        if (para_Disp_cLLD_On == 0)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        if (
                           (para_Disp_position.GetCurrentPosition() > 0 && para_Disp_position.GetMax() == 0 )
                        )
                        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
                        }
                        para_Disp_position.SetMax(para_Disp_position.GetTotal());
                        para_Tips.SetMax(para_Tips.GetTotal());
                        para_Asp_position_2nd.SetMax(para_Asp_position_2nd.GetTotal());
                        para_Disp_position.SetCurrentPosition(1);
                        para_Asp_position_2nd.SetCurrentPosition(1);
                      }
                      if (Flag_Disp_Empty == 1)
                      {
                        if (Remain_Sample != 0)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                      }
                      Sum_loopcounter = Sum_loopcounter + 1;
                      Sample_Cnt_2nd = Sample_Cnt - STARMag_Remain;
                      Sample_Cnt_2nd = Sample_Cnt_2nd - Sample_Cnt_Intermediate;
                    }
                    else
                    {
                      EndPos = STARMag_Remain;
                      Sample_Cnt_2nd = Sample_Cnt - STARMag_Remain;
                    }
                  }
                  else
                  {
                    EndPos = STARMag_Remain;
                    Sample_Cnt_2nd = Sample_Cnt - STARMag_Remain;
                  }
                }
                else
                {
                  if (Intermediate_Criteria > 7)
                  {
                    if (Re_Remain_Sample != 0)
                    {
                      CurPos = STARMag_Remain + 1;
                      EndPos = 8 - Re_Remain_Sample;
                      EndPos = EndPos + STARMag_Remain;
                      para_Disp_position.SetCount(EndPos);
                      para_Disp_position.SetCurrentPosition(CurPos);
                      TrcTraceSequence(para_Disp_position);
                      Sample_Cnt_Intermediate = 8 - Re_Remain_Sample;
                      LoopCnt = 900 / para_Volume;
                      Asp_Volume_Extra = 30;
                      if (file4_Step_Name == "Lysis_Buffer_Dispense_b-Th")
                      {
                        Asp_Volume_Extra = Asp_Volume_Extra + para_Volume;
                      }
                      if (file4_Step_Name == "Elution_Buffer_Dispense")
                      {
                        Asp_Volume_Extra = Asp_Volume_Extra + para_Volume;
                      }
                      Case_Disp_Empty = 2;
                      if (LoopCnt >= 6)
                      {
                        LoopCnt = 6;
                      }
                      else
                      {
                        if (LoopCnt >= 4)
                        {
                        LoopCnt = 4;
                        }
                        else
                        {
                        if (LoopCnt >= 3)
                        {
                        LoopCnt = 3;
                        }
                        else
                        {
                        if (LoopCnt < 2)
                        {
                        Asp_Volume_Extra = 0;
                        }
                        LoopCnt = 2;
                        Case_Disp_Empty = 3;
                        }
                        }
                      }
                      Asp_Volume_ch1 = 0;
                      Asp_Volume_ch2 = 0;
                      Asp_Volume_ch3 = 0;
                      Asp_Volume_ch4 = 0;
                      Asp_Volume_ch5 = 0;
                      Asp_Volume_ch6 = 0;
                      Asp_Volume_ch7 = 0;
                      Asp_Volume_ch8 = 0;
                      preAliq_Volume_ch1 = 0;
                      preAliq_Volume_ch2 = 0;
                      preAliq_Volume_ch3 = 0;
                      preAliq_Volume_ch4 = 0;
                      preAliq_Volume_ch5 = 0;
                      preAliq_Volume_ch6 = 0;
                      preAliq_Volume_ch7 = 0;
                      preAliq_Volume_ch8 = 0;
                      if (Sample_Cnt_Intermediate == 1)
                      {
                        Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                        Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                        preAliq_Volume_ch1 = para_Volume;
                      }
                      if (Sample_Cnt_Intermediate == 2)
                      {
                        Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                        Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                        preAliq_Volume_ch1 = para_Volume;
                        preAliq_Volume_ch2 = para_Volume;
                      }
                      if (Sample_Cnt_Intermediate == 3)
                      {
                        Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                        Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                        preAliq_Volume_ch1 = para_Volume;
                        preAliq_Volume_ch2 = para_Volume;
                        preAliq_Volume_ch3 = para_Volume;
                      }
                      if (Sample_Cnt_Intermediate == 4)
                      {
                        Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                        Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
                        Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                        Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
                        preAliq_Volume_ch1 = para_Volume;
                        preAliq_Volume_ch2 = para_Volume;
                        preAliq_Volume_ch3 = para_Volume;
                        preAliq_Volume_ch4 = para_Volume;
                      }
                      if (Sample_Cnt_Intermediate == 5)
                      {
                        Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                        Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
                        Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
                        Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                        Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
                        Asp_Volume_ch5 = Asp_Volume_ch5 + Asp_Volume_Extra;
                        preAliq_Volume_ch1 = para_Volume;
                        preAliq_Volume_ch2 = para_Volume;
                        preAliq_Volume_ch3 = para_Volume;
                        preAliq_Volume_ch4 = para_Volume;
                        preAliq_Volume_ch5 = para_Volume;
                      }
                      if (Sample_Cnt_Intermediate == 6)
                      {
                        Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                        Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
                        Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
                        Asp_Volume_ch6 = Asp_Volume_ch6 + para_Volume;
                        Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                        Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
                        Asp_Volume_ch5 = Asp_Volume_ch5 + Asp_Volume_Extra;
                        Asp_Volume_ch6 = Asp_Volume_ch6 + Asp_Volume_Extra;
                        preAliq_Volume_ch1 = para_Volume;
                        preAliq_Volume_ch2 = para_Volume;
                        preAliq_Volume_ch3 = para_Volume;
                        preAliq_Volume_ch4 = para_Volume;
                        preAliq_Volume_ch5 = para_Volume;
                        preAliq_Volume_ch6 = para_Volume;
                      }
                      if (Sample_Cnt_Intermediate == 7)
                      {
                        Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                        Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
                        Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
                        Asp_Volume_ch6 = Asp_Volume_ch6 + para_Volume;
                        Asp_Volume_ch7 = Asp_Volume_ch7 + para_Volume;
                        Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                        Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                        Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                        Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
                        Asp_Volume_ch5 = Asp_Volume_ch5 + Asp_Volume_Extra;
                        Asp_Volume_ch6 = Asp_Volume_ch6 + Asp_Volume_Extra;
                        Asp_Volume_ch7 = Asp_Volume_ch7 + Asp_Volume_Extra;
                        preAliq_Volume_ch1 = para_Volume;
                        preAliq_Volume_ch2 = para_Volume;
                        preAliq_Volume_ch3 = para_Volume;
                        preAliq_Volume_ch4 = para_Volume;
                        preAliq_Volume_ch5 = para_Volume;
                        preAliq_Volume_ch6 = para_Volume;
                        preAliq_Volume_ch7 = para_Volume;
                      }
                      MECC::TraceComment(Translate("****** Pipette remaining wells (if any) ******"));
                      MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
                      Trace ("*************************************");
                      Trace ("Disp_Volume = " , para_Volume );
                      Trace ("*************************************");
                      Trace ("Sample_Cnt_Intermediate = ", Sample_Cnt_Intermediate);
                      Trace ("Asp_Volume_ch1 = ", Asp_Volume_ch1);
                      Trace ("Asp_Volume_ch2 = ", Asp_Volume_ch2);
                      Trace ("Asp_Volume_ch3 = ", Asp_Volume_ch3);
                      Trace ("Asp_Volume_ch4 = ", Asp_Volume_ch4);
                      Trace ("Asp_Volume_ch5 =", Asp_Volume_ch5);
                      Trace ("Asp_Volume_ch6 =", Asp_Volume_ch6);
                      Trace ("Asp_Volume_ch7 =", Asp_Volume_ch7);
                      Trace ("Asp_Volume_ch8 =", Asp_Volume_ch8);
                      Trace ("*************************************");
                      MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
                      if (Loop_LoopCnt == 0)
                      {
                        MixCycles = 1;
                        if (file4_Step_Name == "Wash_Buffer_1_Dispense")
                        {
                        MixCycles = 0;
                        }
                      }
                      else
                      {
                        MixCycles = 0;
                      }
                      Disp_Empty = Sum_loopcounter % Case_Disp_Empty;
                      if (Disp_Empty == 0)
                      {
                        Flag_Disp_Empty = 1;
                      }
                      else
                      {
                        Flag_Disp_Empty = 0;
                      }
                      MECC::TraceComment(Translate("44444444444444444444444444444444444444444444444\n44444444444444444444444444444444444444444444444"));
                      Trace ("Sum_loopcounter = ", Sum_loopcounter);
                      Trace ("Flag_Disp_Empty = ", Flag_Disp_Empty);
                      MECC::TraceComment(Translate("44444444444444444444444444444444444444444444444\n44444444444444444444444444444444444444444444444"));
                      {
                        loopCounter2 = 0;
                        while (
                           (para_Disp_position.GetCurrentPosition() > 0)
                        )
                        {
                        AlignSequences(hslTrue, para_Disp_position, 1, para_Tips, 1, para_Asp_position_2nd, 1);
                        loopCounter2 = loopCounter2 + 1;
                        if (para_Asp_cLLD_On == 0)
                        {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        if (Loop_LoopCnt == 0)
                        {
                        if (file4_Step_Name == "Wash_Buffer_1_Dispense")
                        {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        if (file4_Step_Name == "Lysis_Buffer_Dispense_b-Th")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        if (file4_Step_Name == "Elution_Buffer_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        if (para_Disp_cLLD_On == 0)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        if (
                           (para_Disp_position.GetCurrentPosition() > 0 && para_Disp_position.GetMax() == 0 )
                        )
                        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
                        }
                        para_Disp_position.SetMax(para_Disp_position.GetTotal());
                        para_Tips.SetMax(para_Tips.GetTotal());
                        para_Asp_position_2nd.SetMax(para_Asp_position_2nd.GetTotal());
                        para_Disp_position.SetCurrentPosition(1);
                        para_Asp_position_2nd.SetCurrentPosition(1);
                      }
                      if (Flag_Disp_Empty == 1)
                      {
                        if (Remain_Sample != 0)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                      }
                      Sum_loopcounter = Sum_loopcounter + 1;
                      Sample_Cnt_2nd = Sample_Cnt - STARMag_Remain;
                      Sample_Cnt_2nd = Sample_Cnt_2nd - Sample_Cnt_Intermediate;
                    }
                    else
                    {
                      EndPos = STARMag_Remain;
                      Sample_Cnt_2nd = Sample_Cnt - STARMag_Remain;
                    }
                  }
                  else
                  {
                    EndPos = STARMag_Remain;
                    Sample_Cnt_2nd = Sample_Cnt - STARMag_Remain;
                  }
                }
              }
              else
              {
                if (Intermediate_Criteria > 7)
                {
                  if (Re_Remain_Sample != 0)
                  {
                    CurPos = STARMag_Remain + 1;
                    EndPos = 8 - Re_Remain_Sample;
                    EndPos = EndPos + STARMag_Remain;
                    para_Disp_position.SetCount(EndPos);
                    para_Disp_position.SetCurrentPosition(CurPos);
                    TrcTraceSequence(para_Disp_position);
                    Sample_Cnt_Intermediate = 8 - Re_Remain_Sample;
                    LoopCnt = 900 / para_Volume;
                    Asp_Volume_Extra = 30;
                    if (file4_Step_Name == "Lysis_Buffer_Dispense_b-Th")
                    {
                      Asp_Volume_Extra = Asp_Volume_Extra + para_Volume;
                    }
                    if (file4_Step_Name == "Elution_Buffer_Dispense")
                    {
                      Asp_Volume_Extra = Asp_Volume_Extra + para_Volume;
                    }
                    Case_Disp_Empty = 2;
                    if (LoopCnt >= 6)
                    {
                      LoopCnt = 6;
                    }
                    else
                    {
                      if (LoopCnt >= 4)
                      {
                        LoopCnt = 4;
                      }
                      else
                      {
                        if (LoopCnt >= 3)
                        {
                        LoopCnt = 3;
                        }
                        else
                        {
                        if (LoopCnt < 2)
                        {
                        Asp_Volume_Extra = 0;
                        }
                        LoopCnt = 2;
                        Case_Disp_Empty = 3;
                        }
                      }
                    }
                    Asp_Volume_ch1 = 0;
                    Asp_Volume_ch2 = 0;
                    Asp_Volume_ch3 = 0;
                    Asp_Volume_ch4 = 0;
                    Asp_Volume_ch5 = 0;
                    Asp_Volume_ch6 = 0;
                    Asp_Volume_ch7 = 0;
                    Asp_Volume_ch8 = 0;
                    preAliq_Volume_ch1 = 0;
                    preAliq_Volume_ch2 = 0;
                    preAliq_Volume_ch3 = 0;
                    preAliq_Volume_ch4 = 0;
                    preAliq_Volume_ch5 = 0;
                    preAliq_Volume_ch6 = 0;
                    preAliq_Volume_ch7 = 0;
                    preAliq_Volume_ch8 = 0;
                    if (Sample_Cnt_Intermediate == 1)
                    {
                      Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                      Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                      preAliq_Volume_ch1 = para_Volume;
                    }
                    if (Sample_Cnt_Intermediate == 2)
                    {
                      Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                      Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                      Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                      Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                      preAliq_Volume_ch1 = para_Volume;
                      preAliq_Volume_ch2 = para_Volume;
                    }
                    if (Sample_Cnt_Intermediate == 3)
                    {
                      Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                      Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                      Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                      Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                      Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                      Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                      preAliq_Volume_ch1 = para_Volume;
                      preAliq_Volume_ch2 = para_Volume;
                      preAliq_Volume_ch3 = para_Volume;
                    }
                    if (Sample_Cnt_Intermediate == 4)
                    {
                      Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                      Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                      Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                      Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
                      Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                      Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                      Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                      Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
                      preAliq_Volume_ch1 = para_Volume;
                      preAliq_Volume_ch2 = para_Volume;
                      preAliq_Volume_ch3 = para_Volume;
                      preAliq_Volume_ch4 = para_Volume;
                    }
                    if (Sample_Cnt_Intermediate == 5)
                    {
                      Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                      Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                      Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                      Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
                      Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
                      Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                      Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                      Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                      Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
                      Asp_Volume_ch5 = Asp_Volume_ch5 + Asp_Volume_Extra;
                      preAliq_Volume_ch1 = para_Volume;
                      preAliq_Volume_ch2 = para_Volume;
                      preAliq_Volume_ch3 = para_Volume;
                      preAliq_Volume_ch4 = para_Volume;
                      preAliq_Volume_ch5 = para_Volume;
                    }
                    if (Sample_Cnt_Intermediate == 6)
                    {
                      Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                      Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                      Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                      Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
                      Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
                      Asp_Volume_ch6 = Asp_Volume_ch6 + para_Volume;
                      Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                      Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                      Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                      Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
                      Asp_Volume_ch5 = Asp_Volume_ch5 + Asp_Volume_Extra;
                      Asp_Volume_ch6 = Asp_Volume_ch6 + Asp_Volume_Extra;
                      preAliq_Volume_ch1 = para_Volume;
                      preAliq_Volume_ch2 = para_Volume;
                      preAliq_Volume_ch3 = para_Volume;
                      preAliq_Volume_ch4 = para_Volume;
                      preAliq_Volume_ch5 = para_Volume;
                      preAliq_Volume_ch6 = para_Volume;
                    }
                    if (Sample_Cnt_Intermediate == 7)
                    {
                      Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                      Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                      Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                      Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
                      Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
                      Asp_Volume_ch6 = Asp_Volume_ch6 + para_Volume;
                      Asp_Volume_ch7 = Asp_Volume_ch7 + para_Volume;
                      Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                      Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                      Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                      Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
                      Asp_Volume_ch5 = Asp_Volume_ch5 + Asp_Volume_Extra;
                      Asp_Volume_ch6 = Asp_Volume_ch6 + Asp_Volume_Extra;
                      Asp_Volume_ch7 = Asp_Volume_ch7 + Asp_Volume_Extra;
                      preAliq_Volume_ch1 = para_Volume;
                      preAliq_Volume_ch2 = para_Volume;
                      preAliq_Volume_ch3 = para_Volume;
                      preAliq_Volume_ch4 = para_Volume;
                      preAliq_Volume_ch5 = para_Volume;
                      preAliq_Volume_ch6 = para_Volume;
                      preAliq_Volume_ch7 = para_Volume;
                    }
                    MECC::TraceComment(Translate("****** Pipette remaining wells (if any) ******"));
                    MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
                    Trace ("*************************************");
                    Trace ("Disp_Volume = " , para_Volume );
                    Trace ("*************************************");
                    Trace ("Sample_Cnt_Intermediate = ", Sample_Cnt_Intermediate);
                    Trace ("Asp_Volume_ch1 = ", Asp_Volume_ch1);
                    Trace ("Asp_Volume_ch2 = ", Asp_Volume_ch2);
                    Trace ("Asp_Volume_ch3 = ", Asp_Volume_ch3);
                    Trace ("Asp_Volume_ch4 = ", Asp_Volume_ch4);
                    Trace ("Asp_Volume_ch5 =", Asp_Volume_ch5);
                    Trace ("Asp_Volume_ch6 =", Asp_Volume_ch6);
                    Trace ("Asp_Volume_ch7 =", Asp_Volume_ch7);
                    Trace ("Asp_Volume_ch8 =", Asp_Volume_ch8);
                    Trace ("*************************************");
                    MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
                    if (Loop_LoopCnt == 0)
                    {
                      MixCycles = 1;
                    }
                    else
                    {
                      MixCycles = 0;
                    }
                    Disp_Empty = Sum_loopcounter % Case_Disp_Empty;
                    if (Disp_Empty == 0)
                    {
                      Flag_Disp_Empty = 1;
                    }
                    else
                    {
                      Flag_Disp_Empty = 0;
                    }
                    MECC::TraceComment(Translate("44444444444444444444444444444444444444444444444\n44444444444444444444444444444444444444444444444"));
                    Trace ("Sum_loopcounter = ", Sum_loopcounter);
                    Trace ("Flag_Disp_Empty = ", Flag_Disp_Empty);
                    MECC::TraceComment(Translate("44444444444444444444444444444444444444444444444\n44444444444444444444444444444444444444444444444"));
                    {
                      loopCounter2 = 0;
                      while (
                         (para_Disp_position.GetCurrentPosition() > 0)
                      )
                      {
                        AlignSequences(hslTrue, para_Disp_position, 1, para_Tips, 1, para_Asp_position_2nd, 1);
                        loopCounter2 = loopCounter2 + 1;
                        if (para_Asp_cLLD_On == 0)
                        {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        if (file4_Step_Name == "Lysis_Buffer_Dispense_b-Th")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        if (file4_Step_Name == "Elution_Buffer_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        if (para_Disp_cLLD_On == 0)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        if (
                           (para_Disp_position.GetCurrentPosition() > 0 && para_Disp_position.GetMax() == 0 )
                        )
                        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
                      }
                      para_Disp_position.SetMax(para_Disp_position.GetTotal());
                      para_Tips.SetMax(para_Tips.GetTotal());
                      para_Asp_position_2nd.SetMax(para_Asp_position_2nd.GetTotal());
                      para_Disp_position.SetCurrentPosition(1);
                      para_Asp_position_2nd.SetCurrentPosition(1);
                    }
                    if (Flag_Disp_Empty == 1)
                    {
                      if (Remain_Sample != 0)
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                      else
                      {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                      }
                    }
                    Sum_loopcounter = Sum_loopcounter + 1;
                    Sample_Cnt_2nd = Sample_Cnt - STARMag_Remain;
                    Sample_Cnt_2nd = Sample_Cnt_2nd - Sample_Cnt_Intermediate;
                  }
                  else
                  {
                    EndPos = STARMag_Remain;
                    Sample_Cnt_2nd = Sample_Cnt - STARMag_Remain;
                  }
                }
                else
                {
                  EndPos = STARMag_Remain;
                  Sample_Cnt_2nd = Sample_Cnt - STARMag_Remain;
                }
              }
            }
          }
          else
          {
            if (Intermediate_Criteria > 7)
            {
              if (Re_Remain_Sample != 0)
              {
                CurPos = STARMag_Remain + 1;
                EndPos = 8 - Re_Remain_Sample;
                EndPos = EndPos + STARMag_Remain;
                para_Disp_position.SetCount(EndPos);
                para_Disp_position.SetCurrentPosition(CurPos);
                TrcTraceSequence(para_Disp_position);
                Sample_Cnt_Intermediate = 8 - Re_Remain_Sample;
                LoopCnt = 900 / para_Volume;
                Asp_Volume_Extra = 30;
                if (file4_Step_Name == "Lysis_Buffer_Dispense_b-Th")
                {
                  Asp_Volume_Extra = Asp_Volume_Extra + para_Volume;
                }
                if (file4_Step_Name == "Elution_Buffer_Dispense")
                {
                  Asp_Volume_Extra = Asp_Volume_Extra + para_Volume;
                }
                Case_Disp_Empty = 2;
                if (LoopCnt >= 6)
                {
                  LoopCnt = 6;
                }
                else
                {
                  if (LoopCnt >= 4)
                  {
                    LoopCnt = 4;
                  }
                  else
                  {
                    if (LoopCnt >= 3)
                    {
                      LoopCnt = 3;
                    }
                    else
                    {
                      if (LoopCnt < 2)
                      {
                        Asp_Volume_Extra = 0;
                      }
                      LoopCnt = 2;
                      Case_Disp_Empty = 3;
                    }
                  }
                }
                Asp_Volume_ch1 = 0;
                Asp_Volume_ch2 = 0;
                Asp_Volume_ch3 = 0;
                Asp_Volume_ch4 = 0;
                Asp_Volume_ch5 = 0;
                Asp_Volume_ch6 = 0;
                Asp_Volume_ch7 = 0;
                Asp_Volume_ch8 = 0;
                preAliq_Volume_ch1 = 0;
                preAliq_Volume_ch2 = 0;
                preAliq_Volume_ch3 = 0;
                preAliq_Volume_ch4 = 0;
                preAliq_Volume_ch5 = 0;
                preAliq_Volume_ch6 = 0;
                preAliq_Volume_ch7 = 0;
                preAliq_Volume_ch8 = 0;
                if (Sample_Cnt_Intermediate == 1)
                {
                  Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                  Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                  preAliq_Volume_ch1 = para_Volume;
                }
                if (Sample_Cnt_Intermediate == 2)
                {
                  Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                  Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                  Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                  Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                  preAliq_Volume_ch1 = para_Volume;
                  preAliq_Volume_ch2 = para_Volume;
                }
                if (Sample_Cnt_Intermediate == 3)
                {
                  Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                  Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                  Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                  Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                  Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                  Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                  preAliq_Volume_ch1 = para_Volume;
                  preAliq_Volume_ch2 = para_Volume;
                  preAliq_Volume_ch3 = para_Volume;
                }
                if (Sample_Cnt_Intermediate == 4)
                {
                  Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                  Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                  Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                  Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
                  Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                  Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                  Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                  Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
                  preAliq_Volume_ch1 = para_Volume;
                  preAliq_Volume_ch2 = para_Volume;
                  preAliq_Volume_ch3 = para_Volume;
                  preAliq_Volume_ch4 = para_Volume;
                }
                if (Sample_Cnt_Intermediate == 5)
                {
                  Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                  Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                  Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                  Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
                  Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
                  Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                  Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                  Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                  Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
                  Asp_Volume_ch5 = Asp_Volume_ch5 + Asp_Volume_Extra;
                  preAliq_Volume_ch1 = para_Volume;
                  preAliq_Volume_ch2 = para_Volume;
                  preAliq_Volume_ch3 = para_Volume;
                  preAliq_Volume_ch4 = para_Volume;
                  preAliq_Volume_ch5 = para_Volume;
                }
                if (Sample_Cnt_Intermediate == 6)
                {
                  Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                  Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                  Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                  Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
                  Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
                  Asp_Volume_ch6 = Asp_Volume_ch6 + para_Volume;
                  Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                  Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                  Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                  Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
                  Asp_Volume_ch5 = Asp_Volume_ch5 + Asp_Volume_Extra;
                  Asp_Volume_ch6 = Asp_Volume_ch6 + Asp_Volume_Extra;
                  preAliq_Volume_ch1 = para_Volume;
                  preAliq_Volume_ch2 = para_Volume;
                  preAliq_Volume_ch3 = para_Volume;
                  preAliq_Volume_ch4 = para_Volume;
                  preAliq_Volume_ch5 = para_Volume;
                  preAliq_Volume_ch6 = para_Volume;
                }
                if (Sample_Cnt_Intermediate == 7)
                {
                  Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
                  Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
                  Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
                  Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
                  Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
                  Asp_Volume_ch6 = Asp_Volume_ch6 + para_Volume;
                  Asp_Volume_ch7 = Asp_Volume_ch7 + para_Volume;
                  Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
                  Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
                  Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
                  Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
                  Asp_Volume_ch5 = Asp_Volume_ch5 + Asp_Volume_Extra;
                  Asp_Volume_ch6 = Asp_Volume_ch6 + Asp_Volume_Extra;
                  Asp_Volume_ch7 = Asp_Volume_ch7 + Asp_Volume_Extra;
                  preAliq_Volume_ch1 = para_Volume;
                  preAliq_Volume_ch2 = para_Volume;
                  preAliq_Volume_ch3 = para_Volume;
                  preAliq_Volume_ch4 = para_Volume;
                  preAliq_Volume_ch5 = para_Volume;
                  preAliq_Volume_ch6 = para_Volume;
                  preAliq_Volume_ch7 = para_Volume;
                }
                MECC::TraceComment(Translate("****** Pipette remaining wells (if any) ******"));
                MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
                Trace ("*************************************");
                Trace ("Disp_Volume = " , para_Volume );
                Trace ("*************************************");
                Trace ("Sample_Cnt_Intermediate = ", Sample_Cnt_Intermediate);
                Trace ("Asp_Volume_ch1 = ", Asp_Volume_ch1);
                Trace ("Asp_Volume_ch2 = ", Asp_Volume_ch2);
                Trace ("Asp_Volume_ch3 = ", Asp_Volume_ch3);
                Trace ("Asp_Volume_ch4 = ", Asp_Volume_ch4);
                Trace ("Asp_Volume_ch5 =", Asp_Volume_ch5);
                Trace ("Asp_Volume_ch6 =", Asp_Volume_ch6);
                Trace ("Asp_Volume_ch7 =", Asp_Volume_ch7);
                Trace ("Asp_Volume_ch8 =", Asp_Volume_ch8);
                Trace ("*************************************");
                MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
                if (Loop_LoopCnt == 0)
                {
                  MixCycles = 1;
                }
                else
                {
                  MixCycles = 0;
                }
                Disp_Empty = Sum_loopcounter % Case_Disp_Empty;
                if (Disp_Empty == 0)
                {
                  Flag_Disp_Empty = 1;
                }
                else
                {
                  Flag_Disp_Empty = 0;
                }
                MECC::TraceComment(Translate("44444444444444444444444444444444444444444444444\n44444444444444444444444444444444444444444444444"));
                Trace ("Sum_loopcounter = ", Sum_loopcounter);
                Trace ("Flag_Disp_Empty = ", Flag_Disp_Empty);
                MECC::TraceComment(Translate("44444444444444444444444444444444444444444444444\n44444444444444444444444444444444444444444444444"));
                {
                  loopCounter2 = 0;
                  while (
                     (para_Disp_position.GetCurrentPosition() > 0)
                  )
                  {
                    AlignSequences(hslTrue, para_Disp_position, 1, para_Tips, 1, para_Asp_position_2nd, 1);
                    loopCounter2 = loopCounter2 + 1;
                    if (para_Asp_cLLD_On == 0)
                    {
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                    else
                    {
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                    if (file4_Step_Name == "Lysis_Buffer_Dispense_b-Th")
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                    if (file4_Step_Name == "Elution_Buffer_Dispense")
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                    if (para_Disp_cLLD_On == 0)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                    if (
                       (para_Disp_position.GetCurrentPosition() > 0 && para_Disp_position.GetMax() == 0 )
                    )
                    { MECC::EndlessSequenceLoopWarning(GetFileName()); }
                  }
                  para_Disp_position.SetMax(para_Disp_position.GetTotal());
                  para_Tips.SetMax(para_Tips.GetTotal());
                  para_Asp_position_2nd.SetMax(para_Asp_position_2nd.GetTotal());
                  para_Disp_position.SetCurrentPosition(1);
                  para_Asp_position_2nd.SetCurrentPosition(1);
                }
                if (Flag_Disp_Empty == 1)
                {
                  if (Remain_Sample != 0)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                  else
                  {
                    if (loopCounter1 != Loop_LoopCnt)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                  }
                }
                Sum_loopcounter = Sum_loopcounter + 1;
                Sample_Cnt_2nd = Sample_Cnt - STARMag_Remain;
                Sample_Cnt_2nd = Sample_Cnt_2nd - Sample_Cnt_Intermediate;
              }
              else
              {
                EndPos = STARMag_Remain;
                Sample_Cnt_2nd = Sample_Cnt - STARMag_Remain;
              }
            }
            else
            {
              EndPos = STARMag_Remain;
              Sample_Cnt_2nd = Sample_Cnt - STARMag_Remain;
            }
          }
        }
        para_Disp_position.SetCount(Sample_Cnt);
        CurPos = EndPos + 1;
        para_Disp_position.SetCurrentPosition(CurPos);
        TrcTraceSequence(para_Disp_position);
        LoopCnt = 900 / para_Volume;
        Asp_Volume_Extra = 30;
        if (file4_Step_Name == "Lysis_Buffer_Dispense_b-Th")
        {
          Asp_Volume_Extra = Asp_Volume_Extra + para_Volume;
        }
        if (file4_Step_Name == "Elution_Buffer_Dispense")
        {
          Asp_Volume_Extra = Asp_Volume_Extra + para_Volume;
        }
        Case_Disp_Empty = 2;
        if (LoopCnt >= 6)
        {
          LoopCnt = 6;
        }
        else
        {
          if (LoopCnt >= 4)
          {
            LoopCnt = 4;
          }
          else
          {
            if (LoopCnt >= 3)
            {
              LoopCnt = 3;
            }
            else
            {
              if (LoopCnt < 2)
              {
                Asp_Volume_Extra = 0;
              }
              LoopCnt = 2;
              Case_Disp_Empty = 3;
            }
          }
        }
        if (file4_Tip_Sequence == 2)
        {
          Sample_Cnt_per_loop = LoopCnt * 4;
        }
        else
        {
          if (file2_Extraction_Kit >= 10)
          {
            if (file4_Step_Name == "Lysis_Buffer_Dispense")
            {
              Sample_Cnt_per_loop = LoopCnt * 4;
            }
            else
            {
              if (file2_Extraction_Kit == 11)
              {
                if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                {
                  Sample_Cnt_per_loop = LoopCnt * 4;
                }
                else
                {
                  Sample_Cnt_per_loop = LoopCnt * 8;
                }
              }
              else
              {
                Sample_Cnt_per_loop = LoopCnt * 8;
              }
            }
          }
          else
          {
            Sample_Cnt_per_loop = LoopCnt * 8;
          }
        }
        Loop_LoopCnt = Sample_Cnt_2nd / Sample_Cnt_per_loop;
        Remain_Sample = Sample_Cnt_per_loop * Loop_LoopCnt;
        Remain_Sample = Sample_Cnt_2nd - Remain_Sample;
        if (file4_Tip_Sequence == 2)
        {
          LoopCnt_Remain = Remain_Sample / 4;
          Re_Remain_Sample = LoopCnt_Remain * 4;
        }
        else
        {
          if (file2_Extraction_Kit >= 10)
          {
            if (file4_Step_Name == "Lysis_Buffer_Dispense")
            {
              LoopCnt_Remain = Remain_Sample / 4;
              Re_Remain_Sample = LoopCnt_Remain * 4;
            }
            else
            {
              if (file2_Extraction_Kit == 11)
              {
                if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                {
                  LoopCnt_Remain = Remain_Sample / 4;
                  Re_Remain_Sample = LoopCnt_Remain * 4;
                }
                else
                {
                  LoopCnt_Remain = Remain_Sample / 8;
                  Re_Remain_Sample = LoopCnt_Remain * 8;
                }
              }
              else
              {
                LoopCnt_Remain = Remain_Sample / 8;
                Re_Remain_Sample = LoopCnt_Remain * 8;
              }
            }
          }
          else
          {
            LoopCnt_Remain = Remain_Sample / 8;
            Re_Remain_Sample = LoopCnt_Remain * 8;
          }
        }
        Re_Remain_Sample = Remain_Sample - Re_Remain_Sample;
        Disp_Multi = para_Volume * LoopCnt;
        Disp_Multi = Disp_Multi + Asp_Volume_Extra;
        Asp_Volume_ch1 = 0;
        Asp_Volume_ch2 = 0;
        Asp_Volume_ch3 = 0;
        Asp_Volume_ch4 = 0;
        Asp_Volume_ch5 = 0;
        Asp_Volume_ch6 = 0;
        Asp_Volume_ch7 = 0;
        Asp_Volume_ch8 = 0;
        preAliq_Volume_ch1 = 0;
        preAliq_Volume_ch2 = 0;
        preAliq_Volume_ch3 = 0;
        preAliq_Volume_ch4 = 0;
        preAliq_Volume_ch5 = 0;
        preAliq_Volume_ch6 = 0;
        preAliq_Volume_ch7 = 0;
        preAliq_Volume_ch8 = 0;
        if (Re_Remain_Sample == 1)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
        }
        if (Re_Remain_Sample == 2)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
          preAliq_Volume_ch2 = para_Volume;
        }
        if (Re_Remain_Sample == 3)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
          Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
          Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
          preAliq_Volume_ch2 = para_Volume;
          preAliq_Volume_ch3 = para_Volume;
        }
        if (Re_Remain_Sample == 4)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
          Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
          Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
          Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
          Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
          preAliq_Volume_ch2 = para_Volume;
          preAliq_Volume_ch3 = para_Volume;
          preAliq_Volume_ch4 = para_Volume;
        }
        if (Re_Remain_Sample == 5)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
          Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
          Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
          Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
          Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
          Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
          Asp_Volume_ch5 = Asp_Volume_ch5 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
          preAliq_Volume_ch2 = para_Volume;
          preAliq_Volume_ch3 = para_Volume;
          preAliq_Volume_ch4 = para_Volume;
          preAliq_Volume_ch5 = para_Volume;
        }
        if (Re_Remain_Sample == 6)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
          Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
          Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
          Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
          Asp_Volume_ch6 = Asp_Volume_ch6 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
          Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
          Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
          Asp_Volume_ch5 = Asp_Volume_ch5 + Asp_Volume_Extra;
          Asp_Volume_ch6 = Asp_Volume_ch6 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
          preAliq_Volume_ch2 = para_Volume;
          preAliq_Volume_ch3 = para_Volume;
          preAliq_Volume_ch4 = para_Volume;
          preAliq_Volume_ch5 = para_Volume;
          preAliq_Volume_ch6 = para_Volume;
        }
        if (Re_Remain_Sample == 7)
        {
          Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
          Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
          Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
          Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
          Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
          Asp_Volume_ch6 = Asp_Volume_ch6 + para_Volume;
          Asp_Volume_ch7 = Asp_Volume_ch7 + para_Volume;
          Asp_Volume_ch1 = Asp_Volume_ch1 + Asp_Volume_Extra;
          Asp_Volume_ch2 = Asp_Volume_ch2 + Asp_Volume_Extra;
          Asp_Volume_ch3 = Asp_Volume_ch3 + Asp_Volume_Extra;
          Asp_Volume_ch4 = Asp_Volume_ch4 + Asp_Volume_Extra;
          Asp_Volume_ch5 = Asp_Volume_ch5 + Asp_Volume_Extra;
          Asp_Volume_ch6 = Asp_Volume_ch6 + Asp_Volume_Extra;
          Asp_Volume_ch7 = Asp_Volume_ch7 + Asp_Volume_Extra;
          preAliq_Volume_ch1 = para_Volume;
          preAliq_Volume_ch2 = para_Volume;
          preAliq_Volume_ch3 = para_Volume;
          preAliq_Volume_ch4 = para_Volume;
          preAliq_Volume_ch5 = para_Volume;
          preAliq_Volume_ch6 = para_Volume;
          preAliq_Volume_ch7 = para_Volume;
        }
        MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
        Trace ("para_Volume = ", para_Volume);
        Trace ("LoopCnt = ", LoopCnt);
        Trace ("Asp_Volume_Extra = ", Asp_Volume_Extra);
        Trace ("Case_Disp_Empty = ", Case_Disp_Empty);
        Trace ("Sample_Cnt_per_loop = ", Sample_Cnt_per_loop);
        Trace ("Loop_LoopCnt = ", Loop_LoopCnt);
        Trace ("Remain_Sample = ", Remain_Sample);
        Trace ("LoopCnt_Remain = ", LoopCnt_Remain);
        Trace ("Re_Remain_Sample = ", Re_Remain_Sample);
        Trace ("Disp_Multi = ", Disp_Multi);
        Trace ("Asp_Volume_ch1 =", Asp_Volume_ch1);
        Trace ("Asp_Volume_ch2 =", Asp_Volume_ch2);
        Trace ("Asp_Volume_ch3 =", Asp_Volume_ch3);
        Trace ("Asp_Volume_ch4 =", Asp_Volume_ch4);
        Trace ("Asp_Volume_ch5 =", Asp_Volume_ch5);
        Trace ("Asp_Volume_ch6 =", Asp_Volume_ch6);
        Trace ("Asp_Volume_ch7 =", Asp_Volume_ch7);
        Trace ("Asp_Volume_ch8 =", Asp_Volume_ch8);
        MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
        if (Loop_LoopCnt > 0)
        {
          Trace ("*************************************");
          Trace ("Disp_Volume = " , para_Volume );
          Trace ("*************************************");
          Trace ("LoopCnt = " , LoopCnt);
          Trace ("Disp_Multi = ", Disp_Multi);
          Trace ("*************************************");
          {
            for(loopCounter1 = 0; loopCounter1 < Loop_LoopCnt;)
            {
              loopCounter1 = loopCounter1 + 1;
              if (loopCounter1 == 1)
              {
                MixCycles = 1;
                if (file2_Extraction_Kit == 11)
                {
                  if (file4_Step_Name == "Wash_Buffer_1_Dispense")
                  {
                    if (Loop_LoopCnt_1st == 0)
                    {
                      if (LoopCnt_Remain_1st == 0)
                      {
                        MixCycles = 0;
                      }
                    }
                  }
                }
              }
              else
              {
                MixCycles = 0;
              }
              Disp_Empty = Sum_loopcounter % Case_Disp_Empty;
              if (Disp_Empty == 0)
              {
                Flag_Disp_Empty = 1;
              }
              else
              {
                Flag_Disp_Empty = 0;
              }
              MECC::TraceComment(Translate("55555555555555555555555555555555555555555555555555\n55555555555555555555555555555555555555555555555555"));
              Trace ("Sum_loopcounter = ", Sum_loopcounter);
              Trace ("Flag_Disp_Empty = ", Flag_Disp_Empty);
              MECC::TraceComment(Translate("55555555555555555555555555555555555555555555555555\n55555555555555555555555555555555555555555555555555"));
              if (para_Asp_cLLD_On == 0)
              {
                if (file4_Tip_Sequence == 2)
                {
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
                else
                {
                  if (file2_Extraction_Kit >= 10)
                  {
                    if (file4_Step_Name == "Lysis_Buffer_Dispense")
                    {
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                    else
                    {
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                  }
                  else
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                }
              }
              else
              {
                if (file2_Extraction_Kit == 11)
                {
                  if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                  else
                  {
                    if (file4_Step_Name == "Lysis_Buffer_Dispense")
                    {
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                    else
                    {
                      if (file4_Step_Name == "Wash_Buffer_1_Dispense")
                      {
                        if (Loop_LoopCnt_1st == 0)
                        {
                        if (LoopCnt_Remain_1st == 0)
                        {
                        if (loopCounter1 == 1)
                        {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                        }
                      }
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                  }
                }
                else
                {
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
              }
              if (file4_Step_Name == "Lysis_Buffer_Dispense_b-Th")
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              if (file4_Step_Name == "Elution_Buffer_Dispense")
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              {
                for(loopCounter30 = 0; loopCounter30 < LoopCnt;)
                {
                  loopCounter30 = loopCounter30 + 1;
                  if (para_Disp_cLLD_On == 0)
                  {
                    if (file4_Tip_Sequence == 2)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                    else
                    {
                      if (file2_Extraction_Kit >= 10)
                      {
                        if (file4_Step_Name == "Lysis_Buffer_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        else
                        {
                        if (file2_Extraction_Kit == 11)
                        {
                        if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        }
                      }
                      else
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      }
                    }
                  }
                  else
                  {
                    if (file2_Extraction_Kit == 11)
                    {
                      if (file4_Step_Name == "Lysis_Buffer_Dispense")
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      }
                      else
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      }
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                  }
                }
              }
              if (Flag_Disp_Empty == 1)
              {
                if (file4_Tip_Sequence == 2)
                {
                  if (Remain_Sample != 0)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                  else
                  {
                    if (loopCounter1 != Loop_LoopCnt)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                  }
                }
                else
                {
                  if (file2_Extraction_Kit >= 10)
                  {
                    if (file4_Step_Name == "Lysis_Buffer_Dispense")
                    {
                      if (Remain_Sample != 0)
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                      else
                      {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                      }
                    }
                    else
                    {
                      if (file2_Extraction_Kit == 11)
                      {
                        if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                        {
                        if (Remain_Sample != 0)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                        }
                        else
                        {
                        if (Remain_Sample != 0)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                        }
                      }
                      else
                      {
                        if (Remain_Sample != 0)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                      }
                    }
                  }
                  else
                  {
                    if (Remain_Sample != 0)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                    else
                    {
                      if (loopCounter1 != Loop_LoopCnt)
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                    }
                  }
                }
              }
              Sum_loopcounter = Sum_loopcounter + 1;
            }
          }
        }
        if (Remain_Sample > 0)
        {
          MECC::TraceComment(Translate("****** Pipette remaining wells (if any) ******"));
          Trace ("*************************************");
          Trace ("Disp_Volume = " , para_Volume );
          Trace ("*************************************");
          Trace ("LoopCnt_Remain = " , LoopCnt_Remain);
          Trace ("Remain_Sample = ", Remain_Sample);
          Trace ("Re_Remain_Sample = ", Re_Remain_Sample);
          Trace ("Asp_Volume_ch1 = ", Asp_Volume_ch1);
          Trace ("Asp_Volume_ch2 = ", Asp_Volume_ch2);
          Trace ("Asp_Volume_ch3 = ", Asp_Volume_ch3);
          Trace ("Asp_Volume_ch4 = ", Asp_Volume_ch4);
          Trace ("Asp_Volume_ch5 =", Asp_Volume_ch5);
          Trace ("Asp_Volume_ch6 =", Asp_Volume_ch6);
          Trace ("Asp_Volume_ch7 =", Asp_Volume_ch7);
          Trace ("Asp_Volume_ch8 =", Asp_Volume_ch8);
          Trace ("*************************************");
          if (Loop_LoopCnt == 0)
          {
            MixCycles = 1;
            if (file2_Extraction_Kit == 11)
            {
              if (file4_Step_Name == "Wash_Buffer_1_Dispense")
              {
                if (Loop_LoopCnt_1st == 0)
                {
                  MixCycles = 0;
                }
              }
            }
          }
          else
          {
            MixCycles = 0;
          }
          if (LoopCnt_Remain != 0)
          {
            Disp_Empty = Sum_loopcounter % Case_Disp_Empty;
            if (Disp_Empty == 0)
            {
              Flag_Disp_Empty = 1;
            }
            else
            {
              Flag_Disp_Empty = 0;
            }
            MECC::TraceComment(Translate("666666666666666666666666666666666666666666\n666666666666666666666666666666666666666666"));
            Trace ("Sum_loopcounter = ", Sum_loopcounter);
            Trace ("Flag_Disp_Empty = ", Flag_Disp_Empty);
            MECC::TraceComment(Translate("666666666666666666666666666666666666666666\n666666666666666666666666666666666666666666"));
            Disp_Multi = para_Volume * LoopCnt_Remain;
            Disp_Multi = Disp_Multi + Asp_Volume_Extra;
            if (para_Asp_cLLD_On == 0)
            {
              if (file4_Tip_Sequence == 2)
              {
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              }
              else
              {
                if (file2_Extraction_Kit >= 10)
                {
                  if (file4_Step_Name == "Lysis_Buffer_Dispense")
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                  else
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                }
                else
                {
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
              }
            }
            else
            {
              if (file2_Extraction_Kit == 11)
              {
                if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                {
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
                else
                {
                  if (file4_Step_Name == "Lysis_Buffer_Dispense")
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                  else
                  {
                    if (file4_Step_Name == "Wash_Buffer_1_Dispense")
                    {
                      if (Loop_LoopCnt == 0)
                      {
                        if (Loop_LoopCnt_1st == 0)
                        {
                        if (LoopCnt_Remain_1st == 0)
                        {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                      }
                    }
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                }
              }
              else
              {
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              }
            }
            if (file4_Step_Name == "Lysis_Buffer_Dispense_b-Th")
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            if (file4_Step_Name == "Elution_Buffer_Dispense")
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            {
              for(loopCounter30 = 0; loopCounter30 < LoopCnt_Remain;)
              {
                loopCounter30 = loopCounter30 + 1;
                if (para_Disp_cLLD_On == 0)
                {
                  if (file4_Tip_Sequence == 2)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                  else
                  {
                    if (file2_Extraction_Kit >= 10)
                    {
                      if (file4_Step_Name == "Lysis_Buffer_Dispense")
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      }
                      else
                      {
                        if (file2_Extraction_Kit == 11)
                        {
                        if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                      }
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                  }
                }
                else
                {
                  if (file2_Extraction_Kit == 11)
                  {
                    if (file4_Step_Name == "Lysis_Buffer_Dispense")
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                  }
                  else
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                }
              }
            }
            if (Flag_Disp_Empty == 1)
            {
              if (file4_Tip_Sequence == 2)
              {
                if (Remain_Sample != 0)
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                }
                else
                {
                  if (loopCounter1 != Loop_LoopCnt)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                }
              }
              else
              {
                if (file2_Extraction_Kit >= 10)
                {
                  if (file4_Step_Name == "Lysis_Buffer_Dispense")
                  {
                    if (Remain_Sample != 0)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                    else
                    {
                      if (loopCounter1 != Loop_LoopCnt)
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                    }
                  }
                  else
                  {
                    if (file2_Extraction_Kit == 11)
                    {
                      if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                      {
                        if (Remain_Sample != 0)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                      }
                      else
                      {
                        if (Remain_Sample != 0)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        else
                        {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                      }
                    }
                    else
                    {
                      if (Remain_Sample != 0)
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                      else
                      {
                        if (loopCounter1 != Loop_LoopCnt)
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                      }
                    }
                  }
                }
                else
                {
                  if (Remain_Sample != 0)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                  else
                  {
                    if (loopCounter1 != Loop_LoopCnt)
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                  }
                }
              }
            }
            Sum_loopcounter = Sum_loopcounter + 1;
          }
          if (Re_Remain_Sample != 0)
          {
            {
              loopCounter2 = 0;
              while (
                 (para_Disp_position.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, para_Disp_position, 1, para_Tips, 1, para_Asp_position_2nd, 1);
                loopCounter2 = loopCounter2 + 1;
                if (para_Asp_cLLD_On == 0)
                {
                  if (file4_Tip_Sequence == 2)
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                  else
                  {
                    if (file2_Extraction_Kit >= 10)
                    {
                      if (file4_Step_Name == "Lysis_Buffer_Dispense")
                      {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                      else
                      {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                    }
                    else
                    {
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                  }
                }
                else
                {
                  if (file2_Extraction_Kit == 11)
                  {
                    if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                    {
                      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                    }
                    else
                    {
                      if (file4_Step_Name == "Lysis_Buffer_Dispense")
                      {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                      else
                      {
                        if (file4_Step_Name == "Wash_Buffer_1_Dispense")
                        {
                        if (Loop_LoopCnt == 0)
                        {
                        if (Loop_LoopCnt_1st == 0)
                        {
                        if (LoopCnt_Remain_1st == 0)
                        {
                        if (LoopCnt_Remain == 0)
                        {
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        }
                        }
                        }
                        }
                        }
                        subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                      }
                    }
                  }
                  else
                  {
                    subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  }
                }
                if (file4_Step_Name == "Lysis_Buffer_Dispense_b-Th")
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
                if (file4_Step_Name == "Elution_Buffer_Dispense")
                {
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                }
                if (para_Disp_cLLD_On == 0)
                {
                  if (file4_Tip_Sequence == 2)
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                  else
                  {
                    if (file2_Extraction_Kit >= 10)
                    {
                      if (file4_Step_Name == "Lysis_Buffer_Dispense")
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      }
                      else
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      }
                    }
                    else
                    {
                      if (file2_Extraction_Kit == 11)
                      {
                        if (file4_Step_Name == "Wash_Buffer_2_Dispense")
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                        else
                        {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                        }
                      }
                      else
                      {
                        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                      }
                    }
                  }
                }
                else
                {
                  if (file2_Extraction_Kit == 11)
                  {
                    if (file4_Step_Name == "Lysis_Buffer_Dispense")
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                    else
                    {
                      subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    }
                  }
                  else
                  {
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                }
                if (
                   (para_Disp_position.GetCurrentPosition() > 0 && para_Disp_position.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              para_Disp_position.SetMax(para_Disp_position.GetTotal());
              para_Tips.SetMax(para_Tips.GetTotal());
              para_Asp_position_2nd.SetMax(para_Asp_position_2nd.GetTotal());
              para_Disp_position.SetCurrentPosition(1);
              para_Asp_position_2nd.SetCurrentPosition(1);
            }
          }
        }
        if (file2_Extraction_Kit >= 10)
        {
          if (file4_Step_Name == "Lysis_Buffer_Dispense")
          {
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
        }
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    else
    {
      Trace ("Disp_Volume = " , para_Volume );
      {
        for(loopCounter3 = 0; loopCounter3 < LoopCnt_end;)
        {
          loopCounter3 = loopCounter3 + 1;
          {
            loopCounter55 = 0;
            while (No_Tip_Error_Flag == 0)
            {
              loopCounter55 = loopCounter55 + 1;
              onerror goto errLabel_339 ;
              err.Clear();
              subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              if (file1_SimOn == 0)
              {
                TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                if (ChPatternAbort == "11111111")
                {
                  No_Tip_Error_Flag = 1;
                }
                else
                {
                  No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                }
              }
              else
              {
                No_Tip_Error_Flag = 1;
              }
              errLabel_339 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }   /* end if from skip handler if no error */
            }
          }
          No_Tip_Error_Flag = 0;
          HSLML_STAR::AntiDropletControl_1000ulChannel_On(subInstrument);
          if (para_Asp_cLLD_On == 0)
          {
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          else
          {
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          HSLML_STAR::AntiDropletControl_1000ulChannel_Off(subInstrument);
          onerror goto errLabel_340 ;
          err.Clear();
          ADC_Disp_position = para_Disp_position.GetCurrentPosition();
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          errLabel_340 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            SeqCopySequence(seq_ADC_Disp_position, para_Disp_position);
            seq_ADC_Disp_position.SetCurrentPosition(ADC_Disp_position);
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }   /* end if from skip handler if no error */
          subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
      }
      if (Remain_Sample_end > 0)
      {
        {
          loopCounter55 = 0;
          while (No_Tip_Error_Flag == 0)
          {
            loopCounter55 = loopCounter55 + 1;
            onerror goto errLabel_341 ;
            err.Clear();
            subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            if (file1_SimOn == 0)
            {
              TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
              if (ChPatternAbort == ChPattern_Remain)
              {
                No_Tip_Error_Flag = 1;
              }
              else
              {
                No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
              }
            }
            else
            {
              No_Tip_Error_Flag = 1;
            }
            errLabel_341 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
            }   /* end if from skip handler if no error */
          }
        }
        No_Tip_Error_Flag = 0;
        HSLML_STAR::AntiDropletControl_1000ulChannel_On(subInstrument);
        if (para_Asp_cLLD_On == 0)
        {
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        HSLML_STAR::AntiDropletControl_1000ulChannel_Off(subInstrument);
        onerror goto errLabel_342 ;
        err.Clear();
        ADC_Disp_position = para_Disp_position.GetCurrentPosition();
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        errLabel_342 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          SeqCopySequence(seq_ADC_Disp_position, para_Disp_position);
          seq_ADC_Disp_position.SetCurrentPosition(ADC_Disp_position);
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }   /* end if from skip handler if no error */
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
  }

  function Disp_Sample_Decapper( device & subInstrument, device & subInstrument_Decapper, variable Sample_Cnt, variable Sample_Cnt_Ini, variable ChPattern_Chk, variable ChPattern_Remain, variable ChPattern_Remain12, variable para_Asp_cLLD_On, sequence & para_Asp_position, variable para_Asp_Submerge_Depth, variable para_Asp_Bottom_Height, variable para_Asp_Retract_Distance, variable para_Asp_Premix_Vol, variable para_Asp_Premix_Cycle, variable para_Asp_Premix_ASD, variable para_Disp_cLLD_On, sequence & para_Disp_position, variable para_Disp_Submerge_Depth, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Disp_Postmix_Vol, variable para_Disp_Postmix_Cycle, variable para_Disp_Postmix_ASD, variable para_Liquid_Class, variable para_Liquid_Class_2, sequence & para_Tips, variable para_Volume, variable para_PreAliq_cLLD_On, variable para_PreAliq_Submerge_Depth, variable para_PreAliq_Bottom_Height, variable para_PreAliq_Retract_Distance, variable para_PreAliq_Volume, variable SimOn, sequence & seq_All_Samples, variable file2_Extraction_Kit, variable file2_Product_No, variable & Clot_Occurs, variable file4_Tip_Sequence, sequence Move_Channel_Sequence, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep, variable file2_Rack, variable SMP_CAR_32_001, variable SMP_CAR_32_002, variable SMP_CAR_32_003, variable SMP_CAR_24_001, variable SMP_CAR_24_002, variable SMP_CAR_24_003, variable SMP_CAR_24_004, variable SMP_CAR_12_Thinprep_001, variable SMP_CAR_12_Thinprep_002, variable SMP_CAR_12_Thinprep_003, variable SMP_CAR_12_Thinprep_004, variable SMP_CAR_12_Thinprep_005, variable SMP_CAR_12_Thinprep_006, variable SMP_CAR_12_Thinprep_007, variable SMP_CAR_12_Thinprep_008, sequence Seq_SampleRacks, variable file2_Decapper, sequence para_Disp_position_remain ) void {
    private variable CurMovementPos;
    private variable SmpChk_Error_Flag;
    private variable CurDWP96;
    private variable No_Tip_Error_Flag;
    private variable LoopCnt;
    private variable Vial_Position_No;
    private dialog dialogHandle_343;
    private variable Remain_Sample;
    private dialog dialogHandle_344;
    private variable positionTip_Decap;
    private variable loopCounter99;
    private variable file99_PositionID;
    private variable file99_LabwareID;
    private variable file99_No;
    private variable file99_ChannelError;
    private file file99;
    private variable ChPattern_decap;
    private variable Length_decapError;
    private variable ChPattern_advance;
    private dialog dialogHandle_345;
    private dialog dialogHandle_346;
    Clot_Occurs = 0;
    No_Tip_Error_Flag = 0;
    SmpChk_Error_Flag = 1;
    Remain_Sample_Flag = 0;
    ChannelError_Decapper.SetSize(0);
    MECC::TraceComment(Translate("********************* Add Samples to 96 DWP  *********************"));
    if (Sample_Cnt < 4)
    {
      SeqCopySequence(para_Disp_position, para_Disp_position_remain);
    }
    t_dev_deckLayoutFileName = DevGetDeckLayoutFileName(subInstrument);
    SeqCopySequence(t_seq_refTipCarrier, para_Tips);
    SeqCopySequence(t_seq_refAspirateSeq, para_Asp_position);
    SeqCopySequence(t_seq_refDispenseSeq, para_Disp_position);
    ChannelSelection_decapError = Translate("00000000");
    SimOn_Decap = SimOn;
    Tip_Carrier_1mL_Decap = Tip_Carrier_1mL;
    Tip_Carrier_300uL_Decap = Tip_Carrier_300uL;
    loopCounter_Decap = 0;
    Vial_Position_No = 1;
    decapChPattern = Translate("1111");
    LoopCnt = Sample_Cnt / 4;
    Sample_Cnt_Decap = Sample_Cnt;
    Remain_Sample = Sample_Cnt % 4;
    Trace( "The number of loops to perform is: ", LoopCnt );
    Trace( "The number of leftover samples is: ", Remain_Sample );
    {
      for(loopCounter_Decap = 0; loopCounter_Decap < LoopCnt;)
      {
        loopCounter_Decap = loopCounter_Decap + 1;
        MECC::TraceComment(Translate("+++++++++++++++++++++++++++++ Advance Vials ++++++++++++++++++++++++++++++++"));
        {
          	variable arrRetValues[];
          	arrRetValues = subInstrument_Decapper._775F567E_C5D0_49BF_8E61_4AFD20B4C3B5("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"); // AdvanceVials
          	decapChPattern = arrRetValues[1];
        }
        ChPattern_advance = decapChPattern;
        Trace( "ChPattern_advance: ", ChPattern_advance );
        CurDWP96 = t_seq_refDispenseSeq.GetCurrentPosition();
        Var_PipHandle = Fork( "_executePipettingInParallel" );
        if (Var_PipHandle == 0)
        {
          dialogHandle_346.SetOutput(Translate("Could not properly create the new thread D:"));
          if( 0 == dialogHandle_346.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          dialogHandle_346.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          if( 0 == dialogHandle_346.PlaySound("") )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          abort;
        }
        if( 0 == eventTipPickupComplete.WaitEvent(hslInfinite) )
        {
              MECC::RaiseRuntimeErrorEx(-1221721854, MECC::IDS::stepNameWaitForEvent, MECC::IDS::errorStepFailedTimeout, "", "HxMetEdCompCmd");
        }
        MECC::TraceComment(Translate("+++++++++++++++++++++++++++++ Decap Vials ++++++++++++++++++++++++++++++++"));
        {
          	variable arrRetValues[];
          	arrRetValues = subInstrument_Decapper._28A6CFB7_013D_4122_B1CB_9A00D89D8ED4("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"); // DecapVials
          	decapChPattern = arrRetValues[4];
        }
        ChPattern_decap = decapChPattern;
        Trace( "ChPattern_decap: ", ChPattern_decap );
        if (ChPattern_advance != ChPattern_decap)
        {
          ChPattern_advance = StrFVal(ChPattern_advance);
          ChPattern_decap = StrFVal(ChPattern_decap);
          ChPattern_advance = MthCeiling(ChPattern_advance);
          ChPattern_decap = MthCeiling(ChPattern_decap);
          ChannelSelection_decapError = ChPattern_advance - ChPattern_decap;
          ChannelSelection_decapError = Util2::ToString(ChannelSelection_decapError);
          Length_decapError = StrGetLength(ChannelSelection_decapError);
          if (Length_decapError == 1)
          {
            ChannelSelection_decapError = StrConcat4(Translate("000"), ChannelSelection_decapError, Translate("00"), Translate("00"));
          }
          if (Length_decapError == 2)
          {
            ChannelSelection_decapError = StrConcat4(Translate("00"), ChannelSelection_decapError, Translate("00"), Translate("00"));
          }
          if (Length_decapError == 3)
          {
            ChannelSelection_decapError = StrConcat4(Translate("0"), ChannelSelection_decapError, Translate("00"), Translate("00"));
          }
          if (Length_decapError == 4)
          {
            ChannelSelection_decapError = StrConcat2(ChannelSelection_decapError, Translate("0000"));
          }
        }
        else
        {
          ChannelSelection_decapError = Translate("00000000");
        }
        Trace( "ChannelSelection_decapError_beforeAspiration: ", ChannelSelection_decapError );
        if( 0 == eventDecapComplete.SetEvent() )
        {
              MECC::RaiseRuntimeErrorEx(-1557266176, MECC::IDS::stepNameSetEvent, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == eventAspirateComplete.WaitEvent(hslInfinite) )
        {
              MECC::RaiseRuntimeErrorEx(-1221721854, MECC::IDS::stepNameWaitForEvent, MECC::IDS::errorStepFailedTimeout, "", "HxMetEdCompCmd");
        }
        MECC::TraceComment(Translate("+++++++++++++++++++++++++++++ Recap Vials ++++++++++++++++++++++++++++++++"));
        subInstrument_Decapper._71F882C3_11FB_4A71_8ED0_089A21A5EF6F("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"); // RecapVials
        if( 0 == eventPipetteComplete.WaitEvent(hslInfinite) )
        {
              MECC::RaiseRuntimeErrorEx(-1221721854, MECC::IDS::stepNameWaitForEvent, MECC::IDS::errorStepFailedTimeout, "", "HxMetEdCompCmd");
        }
        Join( Var_PipHandle, hslInfinite );
        Vial_Position_No = Vial_Position_No + 4;
        CurDWP96 = CurDWP96 + 4;
        t_seq_refDispenseSeq.SetCurrentPosition(CurDWP96);
        CurMovementPos = CurMovementPos + 4;
        Move_Channel_Sequence.SetCurrentPosition(CurMovementPos);
      }
    }
    if (Remain_Sample > 0)
    {
      ChannelSelection_decapError = Translate("00000000");
      Trace( "Transfering the remaining samples" );
      MECC::TraceComment(Translate("+++++++++++++++++++++++++++++ Advance Vials ++++++++++++++++++++++++++++++++"));
      {
        	variable arrRetValues[];
        	arrRetValues = subInstrument_Decapper._775F567E_C5D0_49BF_8E61_4AFD20B4C3B5("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"); // AdvanceVials
        	decapChPattern = arrRetValues[1];
      }
      ChPattern_advance = decapChPattern;
      Trace( "ChPattern_advance: ", ChPattern_advance );
      CurDWP96 = t_seq_refDispenseSeq.GetCurrentPosition();
      Var_PipHandle = Fork( "_executePipettingInParallel" );
      Remain_Sample_Flag = 1;
      if (Var_PipHandle == 0)
      {
        dialogHandle_345.SetOutput(Translate("Could not properly create the new thread D:"));
        if( 0 == dialogHandle_345.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
        {
              MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        dialogHandle_345.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        if( 0 == dialogHandle_345.PlaySound("") )
        {
              MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        abort;
      }
      if( 0 == eventTipPickupComplete.WaitEvent(hslInfinite) )
      {
            MECC::RaiseRuntimeErrorEx(-1221721854, MECC::IDS::stepNameWaitForEvent, MECC::IDS::errorStepFailedTimeout, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment(Translate("+++++++++++++++++++++++++++++ Decap Vials ++++++++++++++++++++++++++++++++"));
      {
        	variable arrRetValues[];
        	arrRetValues = subInstrument_Decapper._28A6CFB7_013D_4122_B1CB_9A00D89D8ED4("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"); // DecapVials
        	decapChPattern = arrRetValues[4];
      }
      ChPattern_decap = decapChPattern;
      Trace( "ChPattern_decap: ", ChPattern_decap );
      if (ChPattern_advance != ChPattern_decap)
      {
        ChPattern_advance = StrFVal(ChPattern_advance);
        ChPattern_decap = StrFVal(ChPattern_decap);
        ChPattern_advance = MthCeiling(ChPattern_advance);
        ChPattern_decap = MthCeiling(ChPattern_decap);
        ChannelSelection_decapError = ChPattern_advance - ChPattern_decap;
        ChannelSelection_decapError = Util2::ToString(ChannelSelection_decapError);
        Length_decapError = StrGetLength(ChannelSelection_decapError);
        if (Length_decapError == 1)
        {
          ChannelSelection_decapError = StrConcat4(Translate("000"), ChannelSelection_decapError, Translate("00"), Translate("00"));
        }
        if (Length_decapError == 2)
        {
          ChannelSelection_decapError = StrConcat4(Translate("00"), ChannelSelection_decapError, Translate("00"), Translate("00"));
        }
        if (Length_decapError == 3)
        {
          ChannelSelection_decapError = StrConcat4(Translate("0"), ChannelSelection_decapError, Translate("00"), Translate("00"));
        }
        if (Length_decapError == 4)
        {
          ChannelSelection_decapError = StrConcat2(ChannelSelection_decapError, Translate("0000"));
        }
      }
      if( 0 == eventDecapComplete.SetEvent() )
      {
            MECC::RaiseRuntimeErrorEx(-1557266176, MECC::IDS::stepNameSetEvent, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == eventAspirateComplete.WaitEvent(hslInfinite) )
      {
            MECC::RaiseRuntimeErrorEx(-1221721854, MECC::IDS::stepNameWaitForEvent, MECC::IDS::errorStepFailedTimeout, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment(Translate("+++++++++++++++++++++++++++++ Recap Vials ++++++++++++++++++++++++++++++++"));
      subInstrument_Decapper._71F882C3_11FB_4A71_8ED0_089A21A5EF6F("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"); // RecapVials
      Join( Var_PipHandle, hslInfinite );
    }
    file99.AddField("NO", file99_No, hslString, 255);
    file99.AddField("LabwareID", file99_LabwareID, hslString, 255);
    file99.AddField("PositionID", file99_PositionID, hslString, 255);
    file99.AddField("ChannelError", file99_ChannelError, hslString, 255);
    file99.SetDelimiter(",");
    if( 0 == file99.Open("C:\\Seegene_Method_Setting\\Clot Error.csv", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\Clot Error.csv", "HxMetEdCompCmd");
    }
    Seq_SampleRacks.SetCurrentPosition(1);
    file99_No = 0;
    if (Remain_Sample == 1)
    {
      Sample_Cnt = Sample_Cnt + 3;
    }
    if (Remain_Sample == 2)
    {
      Sample_Cnt = Sample_Cnt + 2;
    }
    if (Remain_Sample == 3)
    {
      Sample_Cnt = Sample_Cnt + 1;
    }
    {
      for(loopCounter99 = 0; loopCounter99 < Sample_Cnt;)
      {
        loopCounter99 = loopCounter99 + 1;
        file99_No = file99_No + 1;
        file99_LabwareID = SeqGetLabwareId(Seq_SampleRacks);
        file99_PositionID = SeqGetPositionId(Seq_SampleRacks);
        file99_PositionID = StrIVal(file99_PositionID);
        file99_ChannelError=ChannelError_Decapper.GetAt(file99_No-1);
        if( 0 == file99.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        SeqIncrement(Seq_SampleRacks, 1);
      }
    }
    if( 0 != file99.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file99.RemoveFields();
    Remain_Sample_Flag = 0;
    para_Disp_position.SetCurrentPosition(1);
    Move_Channel_Sequence.SetCurrentPosition(1);
    positionTip_Decap = t_seq_refTipCarrier.GetCurrentPosition();
    para_Tips.SetCurrentPosition(positionTip_Decap);
  }

  function Disp_Sample_Decapper_Pipetting( device & subInstrument, sequence & para_Asp_position, sequence & para_Disp_position, sequence & para_Tips ) void {
    private variable isTipThere;
    private variable ChannelSelection_NoLiquidLevelFound;
    private variable channelIndex;
    private variable ChannelSelection_NotEnoughLiquidPresent;
    private variable loopCounter55;
    private variable ChannelSelection_AllError2;
    private variable ChPatternAbort;
    private variable CurDWP96;
    private variable ChannelSelection_AllError;
    private variable ChannelSelection_LiquidNotCorrectlyAspirated;
    private variable No_Tip_Error_Flag;
    private variable firmwareReturn;
    private variable ChannelSelection_AllCh;
    private variable ChannelSelection_NotError;
    private variable ChPattern_Remain4;
    private variable ChannelSelection_UnexpectedcLLDfound;
    private variable CurSmpPos;
    private variable numOfChannels;
    private variable ChannelSelection_ClotDetected;
    private variable PresentTipNo;
    private variable firmwareCommand;
    private variable ChannelError_3rd;
    private variable ChannelError_4th;
    private variable ChannelError_2nd;
    private variable ChannelError_1st;
    private variable TipsStillOn;
    private variable Remain_Disp_position;
    No_Tip_Error_Flag = 0;
    Remain_Sample_Decap = Sample_Cnt_Decap % 4;
    ChPattern_Remain4 = StrConcat2(decapChPattern, Translate("0000"));
    Trace( "decapChPattern: ", decapChPattern );
    Trace( "ChPattern_Remain4: ", ChPattern_Remain4 );
    if (Remain_Sample_Flag == 0)
    {
      {
        loopCounter55 = 0;
        while (No_Tip_Error_Flag == 0)
        {
          loopCounter55 = loopCounter55 + 1;
          onerror goto errLabel_347 ;
          err.Clear();
          subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          subInstrument._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
          if (SimOn_Decap == 0)
          {
            TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
            if (ChPatternAbort == ChPattern_Remain4)
            {
              No_Tip_Error_Flag = 1;
            }
            else
            {
              No_Tip_Error_Handling(subInstrument, 1, para_Tips, Tip_Carrier_1mL_Decap, Tip_Carrier_300uL_Decap, Tip_Carrier_1mL_Decap, Translate("false"), para_Tips, para_Tips, para_Tips, para_Tips);
            }
          }
          else
          {
            No_Tip_Error_Flag = 1;
          }
          errLabel_347 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            No_Tip_Error_Handling(subInstrument, 1, para_Tips, Tip_Carrier_1mL_Decap, Tip_Carrier_300uL_Decap, Tip_Carrier_1mL_Decap, Translate("false"), para_Tips, para_Tips, para_Tips, para_Tips);
          }   /* end if from skip handler if no error */
        }
      }
      No_Tip_Error_Flag = 0;
      if (SimOn_Decap == 0)
      {
        ChannelSelection_NotError = Translate("");
        PresentTipNo = 0;
        numOfChannels = DevGetCfgValueWithKey(subInstrument, 1);
        {
          for(channelIndex = 0; channelIndex < numOfChannels;)
          {
            channelIndex = channelIndex + 1;
            firmwareCommand = StrConcat4(Translate("P"), channelIndex, Translate("RW"), Translate(""));
            {
              	variable arrRetValues[];
              	arrRetValues = subInstrument._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
              	firmwareReturn = arrRetValues[3];
            }
            isTipThere = StrMid(firmwareReturn, 5, 1);
            if (isTipThere == "1")
            {
              PresentTipNo = PresentTipNo + 1;
            }
            ChannelSelection_NotError = StrConcat2(ChannelSelection_NotError, isTipThere);
          }
        }
      }
      else
      {
        ChannelSelection_NotError = Translate("11110000");
        PresentTipNo = 4;
      }
      if( 0 == eventTipPickupComplete.SetEvent() )
      {
            MECC::RaiseRuntimeErrorEx(-1557266176, MECC::IDS::stepNameSetEvent, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == eventDecapComplete.WaitEvent(hslInfinite) )
      {
            MECC::RaiseRuntimeErrorEx(-1221721854, MECC::IDS::stepNameWaitForEvent, MECC::IDS::errorStepFailedTimeout, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
      Trace ("loopCounter of LoopCnt= ",loopCounter_Decap);
      Trace ("Current Sample Position = ",CurSmpPos);
      Trace ("Current DWP96 Position = ",CurDWP96);
      MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
      ChPattern_Remain4 = StrConcat2(decapChPattern, Translate("0000"));
      Trace( "decapChPattern: ", decapChPattern );
      Trace( "ChPattern_Remain4: ", ChPattern_Remain4 );
      MECC::TraceComment(Translate("+++++++++++++++++++++++++++++  Aspiration ++++++++++++++++++++++++++++++++"));
      onerror goto errLabel_348 ;
      err.Clear();
      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_decapError);
      errLabel_348 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_decapError);
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      }   /* end if from skip handler if no error */
      ChannelError_1st = StrMid(ChannelSelection_AllError, 0, 1);
      ChannelError_2nd = StrMid(ChannelSelection_AllError, 1, 1);
      ChannelError_3rd = StrMid(ChannelSelection_AllError, 2, 1);
      ChannelError_4th = StrMid(ChannelSelection_AllError, 3, 1);
      if( 0 == eventAspirateComplete.SetEvent() )
      {
            MECC::RaiseRuntimeErrorEx(-1557266176, MECC::IDS::stepNameSetEvent, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if (ChannelSelection_NotError != "00000000")
      {
        if (ChannelSelection_NotError == ChannelSelection_AllCh)
        {
          ChannelError_1st = 0;
          ChannelError_2nd = 0;
          ChannelError_3rd = 0;
          ChannelError_4th = 0;
        }
        MECC::TraceComment(Translate("+++++++++++++++++++++++++++++  Dispense ++++++++++++++++++++++++++++++++"));
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      else
      {
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      ChannelError_Decapper.AddAsLast(ChannelError_1st);
      ChannelError_Decapper.AddAsLast(ChannelError_2nd);
      ChannelError_Decapper.AddAsLast(ChannelError_3rd);
      ChannelError_Decapper.AddAsLast(ChannelError_4th);
      if( 0 == eventPipetteComplete.SetEvent() )
      {
            MECC::RaiseRuntimeErrorEx(-1557266176, MECC::IDS::stepNameSetEvent, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    else
    {
      {
        loopCounter55 = 0;
        while (No_Tip_Error_Flag == 0)
        {
          loopCounter55 = loopCounter55 + 1;
          onerror goto errLabel_349 ;
          err.Clear();
          subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          subInstrument._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
          if (SimOn_Decap == 0)
          {
            TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
            if (ChPatternAbort == ChPattern_Remain4)
            {
              No_Tip_Error_Flag = 1;
            }
            else
            {
              No_Tip_Error_Handling(subInstrument, 1, para_Tips, Tip_Carrier_1mL_Decap, Tip_Carrier_300uL_Decap, Tip_Carrier_1mL_Decap, Translate("false"), para_Tips, para_Tips, para_Tips, para_Tips);
            }
          }
          else
          {
            No_Tip_Error_Flag = 1;
          }
          errLabel_349 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            No_Tip_Error_Handling(subInstrument, 1, para_Tips, Tip_Carrier_1mL_Decap, Tip_Carrier_300uL_Decap, Tip_Carrier_1mL_Decap, Translate("false"), para_Tips, para_Tips, para_Tips, para_Tips);
          }   /* end if from skip handler if no error */
        }
      }
      No_Tip_Error_Flag = 0;
      if( 0 == eventTipPickupComplete.SetEvent() )
      {
            MECC::RaiseRuntimeErrorEx(-1557266176, MECC::IDS::stepNameSetEvent, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == eventDecapComplete.WaitEvent(hslInfinite) )
      {
            MECC::RaiseRuntimeErrorEx(-1221721854, MECC::IDS::stepNameWaitForEvent, MECC::IDS::errorStepFailedTimeout, "", "HxMetEdCompCmd");
      }
      if (SimOn_Decap == 0)
      {
        ChannelSelection_NotError = Translate("");
        PresentTipNo = 0;
        numOfChannels = DevGetCfgValueWithKey(subInstrument, 1);
        {
          for(channelIndex = 0; channelIndex < numOfChannels;)
          {
            channelIndex = channelIndex + 1;
            firmwareCommand = StrConcat4(Translate("P"), channelIndex, Translate("RW"), Translate(""));
            {
              	variable arrRetValues[];
              	arrRetValues = subInstrument._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
              	firmwareReturn = arrRetValues[3];
            }
            isTipThere = StrMid(firmwareReturn, 5, 1);
            if (isTipThere == "1")
            {
              PresentTipNo = PresentTipNo + 1;
            }
            ChannelSelection_NotError = StrConcat2(ChannelSelection_NotError, isTipThere);
          }
        }
      }
      else
      {
        ChannelSelection_NotError = ChPattern_Remain4;
        PresentTipNo = 4;
      }
      MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
      Trace ("loopCounter of LoopCnt= ",loopCounter_Decap + 1);
      Trace ("Current Sample Position = ",CurSmpPos);
      Trace ("Current DWP96 Position = ",CurDWP96);
      MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
      ChPattern_Remain4 = StrConcat2(decapChPattern, Translate("0000"));
      Trace( "decapChPattern: ", decapChPattern );
      Trace( "ChPattern_Remain4: ", ChPattern_Remain4 );
      MECC::TraceComment(Translate("+++++++++++++++++++++++++++++ Aspiration ++++++++++++++++++++++++++++++++"));
      onerror goto errLabel_350 ;
      err.Clear();
      subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_decapError);
      errLabel_350 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        ERRORCHANNELSELECTION_V1::ErrorChannelSelection(2, ChannelSelection_ClotDetected, ChannelSelection_LiquidNotCorrectlyAspirated, ChannelSelection_NotEnoughLiquidPresent, ChannelSelection_NoLiquidLevelFound, ChannelSelection_UnexpectedcLLDfound, ChannelSelection_AllError, ChannelSelection_AllError2, ChannelSelection_NotError, ChannelSelection_AllCh, ChannelSelection_decapError);
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      }   /* end if from skip handler if no error */
      ChannelError_1st = StrMid(ChannelSelection_AllError, 0, 1);
      ChannelError_2nd = StrMid(ChannelSelection_AllError, 1, 1);
      ChannelError_3rd = StrMid(ChannelSelection_AllError, 2, 1);
      ChannelError_4th = StrMid(ChannelSelection_AllError, 3, 1);
      if( 0 == eventAspirateComplete.SetEvent() )
      {
            MECC::RaiseRuntimeErrorEx(-1557266176, MECC::IDS::stepNameSetEvent, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if (ChannelSelection_NotError != "00000000")
      {
        if (ChannelSelection_NotError == ChannelSelection_AllCh)
        {
          ChannelError_1st = 0;
          ChannelError_2nd = 0;
          ChannelError_3rd = 0;
          ChannelError_4th = 0;
        }
        MECC::TraceComment(Translate("+++++++++++++++++++++++++++++  Dispense ++++++++++++++++++++++++++++++++"));
        if (Sample_Cnt_Decap > 4)
        {
          Remain_Disp_position = para_Disp_position.GetCurrentPosition();
          if (Remain_Sample_Decap == 1)
          {
            Remain_Disp_position = Remain_Disp_position - 3;
          }
          if (Remain_Sample_Decap == 2)
          {
            Remain_Disp_position = Remain_Disp_position - 2;
          }
          if (Remain_Sample_Decap == 3)
          {
            Remain_Disp_position = Remain_Disp_position - 1;
          }
          para_Disp_position.SetCurrentPosition(Remain_Disp_position);
        }
        else
        {
          if (Remain_Sample_Decap == 1)
          {
            para_Disp_position.SetCurrentPosition(94);
          }
          if (Remain_Sample_Decap == 2)
          {
            para_Disp_position.SetCurrentPosition(95);
          }
          if (Remain_Sample_Decap == 3)
          {
            para_Disp_position.SetCurrentPosition(96);
          }
        }
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      else
      {
        subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      ChannelError_Decapper.AddAsLast(ChannelError_1st);
      ChannelError_Decapper.AddAsLast(ChannelError_2nd);
      ChannelError_Decapper.AddAsLast(ChannelError_3rd);
      ChannelError_Decapper.AddAsLast(ChannelError_4th);
      if( 0 == eventPipetteComplete.SetEvent() )
      {
            MECC::RaiseRuntimeErrorEx(-1557266176, MECC::IDS::stepNameSetEvent, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
  }

  function _executePipettingInParallel(  ) void {
    private variable l_str_methodName;
    private variable l_str_functionName;
    l_str_functionName = GetFunctionName();
    l_str_methodName = GetMethodFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, l_str_functionName, l_str_methodName, Translate(""));
    {
        device ML_STAR_ref( "", "", hslTrue);
        ML_STAR_ref = GetDeviceRef( t_dev_deckLayoutFileName, "ML_STAR" );
        Disp_Sample_Decapper_Pipetting( ML_STAR_ref, t_seq_refAspirateSeq, t_seq_refDispenseSeq, t_seq_refTipCarrier );
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
  }

  function Disp_Water( device & subInstrument, variable Sample_Cnt, variable Sample_Cnt_Ini, variable ChPattern_Chk, variable ChPattern_Remain, variable ChPattern_Remain2, variable para_Asp_cLLD_On, sequence & para_Asp_position, variable para_Asp_Submerge_Depth, variable para_Asp_Bottom_Height, variable para_Asp_Retract_Distance, variable para_Asp_Premix_Vol, variable para_Asp_Premix_Cycle, variable para_Asp_Premix_ASD, variable para_Asp_ADC_On, variable para_Disp_cLLD_On, sequence & para_Disp_position, variable para_Disp_Submerge_Depth, variable para_Disp_Bottom_Height, variable para_Disp_Retract_Distance, variable para_Disp_Postmix_Vol, variable para_Disp_Postmix_Cycle, variable para_Disp_Postmix_ASD, variable para_Liquid_Class, variable para_Liquid_Class_2, sequence & para_Tips, variable para_Volume, variable para_PreAliq_cLLD_On, variable para_PreAliq_Submerge_Depth, variable para_PreAliq_Bottom_Height, variable para_PreAliq_Retract_Distance, variable para_PreAliq_Volume, variable file4_Step_Name, variable file4_Tip_Sequence, sequence & para_Asp_position_2nd, variable STARMag_Remain, variable Tip_Carrier_1mL, variable Tip_Carrier_300uL, variable file1_SimOn, variable Tip_Carrier_1mL_Thinprep, variable ChPattern_Chk4 ) void {
    private variable Loop_LoopCnt;
    private variable preAliq_Volume_ch1;
    private variable Asp_Volume_ch4;
    private variable Asp_Volume_Extra;
    private variable preAliq_Volume_ch2;
    private variable Asp_Volume_ch5;
    private variable Disp_Multi;
    private variable loopCounter30;
    private variable Sample_Cnt_per_loop;
    private variable preAliq_Volume_ch3;
    private variable Asp_Volume_ch6;
    private variable LoopCnt_end;
    private variable preAliq_Volume_ch4;
    private variable Asp_Volume_ch7;
    private variable preAliq_Volume_ch5;
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    private dialog dialogHandle_365;
    No_Tip_Error_Flag = 0;
    LoopCnt_end = Sample_Cnt / 8;
    Remain_Sample_end = Sample_Cnt % 8;
    LoopCnt = 900 / para_Volume;
    Asp_Volume_Extra = 40;
    Case_Disp_Empty = 2;
    LoopCnt = 12;
    Sample_Cnt_per_loop = LoopCnt * 8;
    Loop_LoopCnt = Sample_Cnt / Sample_Cnt_per_loop;
    Remain_Sample = Sample_Cnt_per_loop * Loop_LoopCnt;
    Remain_Sample = Sample_Cnt - Remain_Sample;
    LoopCnt_Remain = Remain_Sample / 8;
    Re_Remain_Sample = LoopCnt_Remain * 8;
    Re_Remain_Sample = Remain_Sample - Re_Remain_Sample;
    Disp_Multi = para_Volume * LoopCnt;
    Disp_Multi = Disp_Multi + Asp_Volume_Extra;
    Asp_Volume_ch1 = 0;
    Asp_Volume_ch2 = 0;
    Asp_Volume_ch3 = 0;
    Asp_Volume_ch4 = 0;
    Asp_Volume_ch5 = 0;
    Asp_Volume_ch6 = 0;
    Asp_Volume_ch7 = 0;
    Asp_Volume_ch8 = 0;
    preAliq_Volume_ch1 = 0;
    preAliq_Volume_ch2 = 0;
    preAliq_Volume_ch3 = 0;
    preAliq_Volume_ch4 = 0;
    preAliq_Volume_ch5 = 0;
    preAliq_Volume_ch6 = 0;
    preAliq_Volume_ch7 = 0;
    preAliq_Volume_ch8 = 0;
    if (Re_Remain_Sample == 1)
    {
      Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
    }
    if (Re_Remain_Sample == 2)
    {
      Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
      Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
    }
    if (Re_Remain_Sample == 3)
    {
      Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
      Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
      Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
    }
    if (Re_Remain_Sample == 4)
    {
      Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
      Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
      Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
      Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
    }
    if (Re_Remain_Sample == 5)
    {
      Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
      Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
      Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
      Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
      Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
    }
    if (Re_Remain_Sample == 6)
    {
      Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
      Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
      Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
      Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
      Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
      Asp_Volume_ch6 = Asp_Volume_ch6 + para_Volume;
    }
    if (Re_Remain_Sample == 7)
    {
      Asp_Volume_ch1 = Asp_Volume_ch1 + para_Volume;
      Asp_Volume_ch2 = Asp_Volume_ch2 + para_Volume;
      Asp_Volume_ch3 = Asp_Volume_ch3 + para_Volume;
      Asp_Volume_ch4 = Asp_Volume_ch4 + para_Volume;
      Asp_Volume_ch5 = Asp_Volume_ch5 + para_Volume;
      Asp_Volume_ch6 = Asp_Volume_ch6 + para_Volume;
      Asp_Volume_ch7 = Asp_Volume_ch7 + para_Volume;
    }
    MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
    Trace ("para_Volume = ", para_Volume);
    Trace ("LoopCnt = ", LoopCnt);
    Trace ("Asp_Volume_Extra = ", Asp_Volume_Extra);
    Trace ("Case_Disp_Empty = ", Case_Disp_Empty);
    Trace ("Sample_Cnt_per_loop = ", Sample_Cnt_per_loop);
    Trace ("Loop_LoopCnt = ", Loop_LoopCnt);
    Trace ("Remain_Sample = ", Remain_Sample);
    Trace ("LoopCnt_Remain = ", LoopCnt_Remain);
    Trace ("Re_Remain_Sample = ", Re_Remain_Sample);
    Trace ("Disp_Multi = ", Disp_Multi);
    Trace ("Asp_Volume_ch1 =", Asp_Volume_ch1);
    Trace ("Asp_Volume_ch2 =", Asp_Volume_ch2);
    Trace ("Asp_Volume_ch3 =", Asp_Volume_ch3);
    Trace ("Asp_Volume_ch4 =", Asp_Volume_ch4);
    Trace ("Asp_Volume_ch5 =", Asp_Volume_ch5);
    Trace ("Asp_Volume_ch6 =", Asp_Volume_ch6);
    Trace ("Asp_Volume_ch7 =", Asp_Volume_ch7);
    Trace ("Asp_Volume_ch8 =", Asp_Volume_ch8);
    MECC::TraceComment(Translate("&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&\n&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&&"));
    {
      loopCounter55 = 0;
      while (No_Tip_Error_Flag == 0)
      {
        loopCounter55 = loopCounter55 + 1;
        onerror goto errLabel_366 ;
        err.Clear();
        subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        if (file1_SimOn == 0)
        {
          TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
          if (ChPatternAbort == ChPattern_Chk)
          {
            No_Tip_Error_Flag = 1;
          }
          else
          {
            No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
          }
        }
        else
        {
          No_Tip_Error_Flag = 1;
        }
        errLabel_366 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
        }   /* end if from skip handler if no error */
      }
    }
    No_Tip_Error_Flag = 0;
    if (Loop_LoopCnt > 0)
    {
      Trace ("*************************************");
      Trace ("Disp_Volume = " , para_Volume );
      Trace ("*************************************");
      Trace ("LoopCnt = " , LoopCnt);
      Trace ("Disp_Multi = ", Disp_Multi);
      Trace ("*************************************");
      {
        for(loopCounter1 = 0; loopCounter1 < Loop_LoopCnt;)
        {
          loopCounter1 = loopCounter1 + 1;
          if (para_Asp_cLLD_On == 0)
          {
            subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          else
          {
            Water_Error_Flag = 1;
            {
              loopCounter5 = 0;
              while (Water_Error_Flag == 1)
              {
                loopCounter5 = loopCounter5 + 1;
                onerror goto errLabel_367 ;
                err.Clear();
                subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                Water_Error_Flag = 0;
                errLabel_367 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  Water_Error_Flag = 1;
                  subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                  if (loopCounter5 == 2)
                  {
                    dialogHandle_361.SetOutput(Translate("There is not enough or no water."), "\n", Translate("Please dispense the Nuclease-free Water by manual."));
                    if( 0 == dialogHandle_361.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_361.ShowOutput(Translate("Check the Nuclease-free Water"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_361.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    abort;
                  }
                  dialogHandle_355.SetOutput(Translate("Check the water volume and place water tube on the designated position."));
                  if( 0 == dialogHandle_355.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_355.ShowOutput(Translate("Check the Nuclease-free Water"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_355.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  dialogHandle_364.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                  dialogHandle_364.ShowOutput(Translate("Check the Nuclease-free Water"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                  {
                    loopCounter55 = 0;
                    while (No_Tip_Error_Flag == 0)
                    {
                      loopCounter55 = loopCounter55 + 1;
                      onerror goto errLabel_368 ;
                      err.Clear();
                      subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                      if (file1_SimOn == 0)
                      {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                        if (ChPatternAbort == ChPattern_Chk)
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                      }
                      else
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      errLabel_368 : {}
                      onerror goto 0;
                      if (err.GetId() != 0)   /* skip handler if no error */
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }   /* end if from skip handler if no error */
                    }
                  }
                  No_Tip_Error_Flag = 0;
                }   /* end if from skip handler if no error */
              }
            }
          }
          subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          {
            for(loopCounter30 = 0; loopCounter30 < LoopCnt;)
            {
              loopCounter30 = loopCounter30 + 1;
              if (para_Disp_cLLD_On == 0)
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
              else
              {
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              }
            }
          }
        }
      }
    }
    if (Remain_Sample > 0)
    {
      MECC::TraceComment(Translate("****** Pipette remaining wells (if any) ******"));
      Trace ("*************************************");
      Trace ("Disp_Volume = " , para_Volume );
      Trace ("*************************************");
      Trace ("LoopCnt_Remain = " , LoopCnt_Remain);
      Trace ("Remain_Sample = ", Remain_Sample);
      Trace ("Re_Remain_Sample = ", Re_Remain_Sample);
      Trace ("Asp_Volume_ch1 = ", Asp_Volume_ch1);
      Trace ("Asp_Volume_ch2 = ", Asp_Volume_ch2);
      Trace ("Asp_Volume_ch3 = ", Asp_Volume_ch3);
      Trace ("Asp_Volume_ch4 = ", Asp_Volume_ch4);
      Trace ("Asp_Volume_ch5 =", Asp_Volume_ch5);
      Trace ("Asp_Volume_ch6 =", Asp_Volume_ch6);
      Trace ("Asp_Volume_ch7 =", Asp_Volume_ch7);
      Trace ("Asp_Volume_ch8 =", Asp_Volume_ch8);
      Trace ("*************************************");
      if (LoopCnt_Remain != 0)
      {
        Disp_Multi = para_Volume * LoopCnt_Remain;
        Disp_Multi = Disp_Multi + Asp_Volume_Extra;
        if (para_Asp_cLLD_On == 0)
        {
          subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          Water_Error_Flag = 1;
          {
            loopCounter5 = 0;
            while (Water_Error_Flag == 1)
            {
              loopCounter5 = loopCounter5 + 1;
              onerror goto errLabel_369 ;
              err.Clear();
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              Water_Error_Flag = 0;
              errLabel_369 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                Water_Error_Flag = 1;
                subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                if (loopCounter5 == 2)
                {
                  dialogHandle_363.SetOutput(Translate("There is not enough or no water."), "\n", Translate("Please dispense the Nuclease-free Water by manual."));
                  if( 0 == dialogHandle_363.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_363.ShowOutput(Translate("Check the Nuclease-free Water"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_363.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  abort;
                }
                dialogHandle_354.SetOutput(Translate("Check the water volume and place water tube on the designated position."));
                if( 0 == dialogHandle_354.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_354.ShowOutput(Translate("Check the Nuclease-free Water"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_354.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                dialogHandle_365.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                dialogHandle_365.ShowOutput(Translate("Check the Nuclease-free Water"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                {
                  loopCounter55 = 0;
                  while (No_Tip_Error_Flag == 0)
                  {
                    loopCounter55 = loopCounter55 + 1;
                    onerror goto errLabel_370 ;
                    err.Clear();
                    subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                    if (file1_SimOn == 0)
                    {
                      TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                      if (ChPatternAbort == ChPattern_Chk)
                      {
                        No_Tip_Error_Flag = 1;
                      }
                      else
                      {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                      }
                    }
                    else
                    {
                      No_Tip_Error_Flag = 1;
                    }
                    errLabel_370 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                    }   /* end if from skip handler if no error */
                  }
                }
                No_Tip_Error_Flag = 0;
              }   /* end if from skip handler if no error */
            }
          }
        }
        subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        {
          for(loopCounter30 = 0; loopCounter30 < LoopCnt_Remain;)
          {
            loopCounter30 = loopCounter30 + 1;
            if (para_Disp_cLLD_On == 0)
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            else
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
          }
        }
      }
      if (Re_Remain_Sample != 0)
      {
        {
          loopCounter2 = 0;
          while (
             (para_Disp_position.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, para_Asp_position, 1, para_Disp_position, 1, para_Tips, 1);
            loopCounter2 = loopCounter2 + 1;
            if (para_Asp_cLLD_On == 0)
            {
              subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            }
            else
            {
              Water_Error_Flag = 1;
              {
                loopCounter5 = 0;
                while (Water_Error_Flag == 1)
                {
                  loopCounter5 = loopCounter5 + 1;
                  onerror goto errLabel_371 ;
                  err.Clear();
                  subInstrument._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                  Water_Error_Flag = 0;
                  errLabel_371 : {}
                  onerror goto 0;
                  if (err.GetId() != 0)   /* skip handler if no error */
                  {
                    Water_Error_Flag = 1;
                    subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                    subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                    if (loopCounter5 == 2)
                    {
                      dialogHandle_360.SetOutput(Translate("There is not enough or no water."), "\n", Translate("Please dispense the Nuclease-free Water by manual."));
                      if( 0 == dialogHandle_360.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                      {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      dialogHandle_360.ShowOutput(Translate("Check the Nuclease-free Water"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                      if( 0 == dialogHandle_360.PlaySound("") )
                      {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      abort;
                    }
                    dialogHandle_356.SetOutput(Translate("Check the water volume and place water tube on the designated position."));
                    if( 0 == dialogHandle_356.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_356.ShowOutput(Translate("Check the Nuclease-free Water"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_356.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                    subInstrument._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                    dialogHandle_362.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                    dialogHandle_362.ShowOutput(Translate("Check the Nuclease-free Water"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    subInstrument._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                    subInstrument._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                    subInstrument._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                    {
                      loopCounter55 = 0;
                      while (No_Tip_Error_Flag == 0)
                      {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_372 ;
                        err.Clear();
                        subInstrument._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        if (file1_SimOn == 0)
                        {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(subInstrument, ChPatternAbort);
                        if (ChPatternAbort == ChPattern_Chk)
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                        }
                        else
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        errLabel_372 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_Tip_Error_Handling(subInstrument, file4_Tip_Sequence, para_Tips, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                      }
                    }
                    No_Tip_Error_Flag = 0;
                  }   /* end if from skip handler if no error */
                }
              }
            }
            if (para_Disp_cLLD_On == 0)
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            else
            {
              subInstrument._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            if (
               (para_Disp_position.GetCurrentPosition() > 0 && para_Disp_position.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          para_Asp_position.SetMax(para_Asp_position.GetTotal());
          para_Disp_position.SetMax(para_Disp_position.GetTotal());
          para_Tips.SetMax(para_Tips.GetTotal());
          para_Asp_position.SetCurrentPosition(1);
          para_Disp_position.SetCurrentPosition(1);
        }
      }
    }
    subInstrument._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }

  function Check_Tips_2( device & subInstrument, sequence & seq_300ul_Tips, variable Sample_Cnt, variable Sample_Cnt_PRODUCT_001, variable Sample_Cnt_PRODUCT_002, variable Sample_Cnt_PRODUCT_003, variable Sample_Cnt_PRODUCT_004, variable Use_300ul_Tips, variable Random_Access, variable file2_Code, variable file2_PCR_Remain, variable file7_PCR_Remain, variable file9_PCR_Remain, variable file11_PCR_Remain, variable file2_Set_No, variable file2_PC_No, variable file2_WTC_No, variable file2_NC_No, variable file2_SD_No, variable file7_PC_No, variable file7_WTC_No, variable file7_NC_No, variable file7_SD_No, variable file9_PC_No, variable file9_WTC_No, variable file9_NC_No, variable file9_SD_No, variable file11_PC_No, variable file11_WTC_No, variable file11_NC_No, variable file11_SD_No, sequence & seq_All_Tips_Thinprep, variable Use_All_Tips_Thinprep, sequence & seq_All_Tips_Full, variable Use_All_Tips_Full, variable file1_SimOn, variable STEP, variable fileB_Thinprep, variable STARMag_Remain, variable Used_IC_No, variable StepChk_PKBead_Flag, variable StepChk_IC_Flag, variable StepChk_Bead_Flag, variable StepChk_Ctrdg_Flag, variable file2_Extraction_Kit, sequence & seq_50ul_Tips, variable Use_50ul_Tips, variable file2_PPC_No, variable file7_PPC_No, variable file9_PPC_No, variable file11_PPC_No ) void {
    private dialog dialogHandle_373;
    private dialog dialogHandle_374;
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    private dialog dialogHandle_387;
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    private dialog dialogHandle_400;
    MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++\nVerify Number of Tips on Deck is Enough\n+++++++++++++++++++++++++++++++++"));
    MECC::TraceComment(Translate("******* Determine how many tips are required for this method *******"));
    MECC::TraceComment(Translate("******* Determine how many tips are on the deck *******"));
    SamplePlusControl = 0;
    file1_Sample_Cnt = StrIStr(Sample_Cnt);
    file1_Sample_Cnt = StrConcat2(Translate("_"), file1_Sample_Cnt);
    TipsOnDeck_New_Full = seq_All_Tips_Full.GetCount();
    TipsOnDeck_Thinprep = seq_All_Tips_Thinprep.GetCount();
    TipsOnDeck_300 = seq_300ul_Tips.GetCount();
    TipsOnDeck_50 = seq_50ul_Tips.GetCount();
    file1.AddField("Tip_Sequence", file1_Tip_Sequence, hslInteger);
    file1.AddField("Step_Name", file1_Step_Name, hslString, 255);
    file1.AddField(file1_Sample_Cnt, file1_Tip_Usage, hslInteger);
    file1.AddField("Enable", file1_Enable, hslString, 255);
    file1.AddField("No", file1_No, hslInteger);
    if( 0 == file1.Open("C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls" + " " + "'Reconstructed Method$'", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls", "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (file1_Tip_Sequence == 1)
        {
          Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + file1_Tip_Usage;
        }
        if (file1_Tip_Sequence == 2)
        {
          Tip_Usage_1ml_Thinprep = Tip_Usage_1ml_Thinprep + file1_Tip_Usage;
        }
        if (file1_Tip_Sequence == 3)
        {
          Tip_Usage_300ul = Tip_Usage_300ul + file1_Tip_Usage;
        }
        if (file1_Tip_Sequence == 5)
        {
          Tip_Usage_50ul = Tip_Usage_50ul + file1_Tip_Usage;
        }
        Build_Step_or_Not = StrFind(file1_Step_Name, Translate("Build"));
        if (Build_Step_or_Not != -1)
        {
          Return_Value = StrFind(file1_Enable, Translate("1st"));
          if (Return_Value != -1)
          {
            if (file1_No == 1)
            {
              SamplePlusControl = Sample_Cnt_PRODUCT_001 + file2_PC_No + file2_WTC_No + file2_NC_No + file2_SD_No;
              if (file2_PCR_Remain < SamplePlusControl)
              {
                Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + file1_Tip_Usage;
              }
            }
            if (file1_No == 2)
            {
              SamplePlusControl = Sample_Cnt_PRODUCT_002 + file7_PC_No + file7_WTC_No + file7_NC_No + file7_SD_No;
              if (file7_PCR_Remain < SamplePlusControl)
              {
                Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + file1_Tip_Usage;
              }
            }
            if (file1_No == 3)
            {
              SamplePlusControl = Sample_Cnt_PRODUCT_003 + file9_PC_No + file9_WTC_No + file9_NC_No + file9_SD_No;
              if (file9_PCR_Remain < SamplePlusControl)
              {
                Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + file1_Tip_Usage;
              }
            }
            if (file1_No == 4)
            {
              SamplePlusControl = Sample_Cnt_PRODUCT_004 + file11_PC_No + file11_WTC_No + file11_NC_No + file11_SD_No;
              if (file11_PCR_Remain < SamplePlusControl)
              {
                Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + file1_Tip_Usage;
              }
            }
          }
        }
        Return_Value = StrFind(file1_Enable, Translate("EnableICDispense1st"));
        if (Use_All_Tips_Thinprep > 0)
        {
          if (Return_Value != -1)
          {
            Tip_Usage_1ml_Thinprep = Tip_Usage_1ml_Thinprep - 1;
          }
        }
        else
        {
          if (Return_Value != -1)
          {
            if (Sample_Cnt <= 24)
            {
              Tip_Usage_300ul = Tip_Usage_300ul - 2;
            }
            else
            {
              Tip_Usage_300ul = Tip_Usage_300ul - 4;
            }
          }
        }
        Return_Value = StrFind(file1_Enable, Translate("EnableTransferSamples"));
        if (Return_Value != -1)
        {
          if (file1_No == 1)
          {
            Tip_Usage_300ul = Tip_Usage_300ul - Sample_Cnt + Sample_Cnt_PRODUCT_001;
          }
          if (file1_No == 2)
          {
            Tip_Usage_300ul = Tip_Usage_300ul - Sample_Cnt + Sample_Cnt_PRODUCT_002;
          }
          if (file1_No == 3)
          {
            Tip_Usage_300ul = Tip_Usage_300ul - Sample_Cnt + Sample_Cnt_PRODUCT_003;
          }
          if (file1_No == 4)
          {
            Tip_Usage_300ul = Tip_Usage_300ul - Sample_Cnt + Sample_Cnt_PRODUCT_004;
          }
        }
        Chk_Tip_Usage_1mL_zero = 0;
        if (Tip_Usage_1ml_Full > 0)
        {
          Chk_Tip_Usage_1mL_zero = 1;
        }
        if (Tip_Usage_300ul > 0)
        {
          Chk_Tip_Usage_1mL_zero = 1;
        }
        if (Tip_Usage_50ul > 0)
        {
          Chk_Tip_Usage_1mL_zero = 1;
        }
        if (Tip_Usage_1ml_Thinprep > 0)
        {
          Chk_Tip_Usage_1mL_zero = 1;
        }
      }
    }
    if (file1_SimOn == 0)
    {
      if (STEP < 4)
      {
        if (STEP != 2)
        {
          if (Chk_Tip_Usage_1mL_zero != 0)
          {
            if (fileB_Thinprep == "true")
            {
              if (StepChk_Ctrdg_Flag > 0)
              {
                Tip_Usage_1ml_Thinprep = Tip_Usage_1ml_Thinprep + 1;
              }
            }
            else
            {
              if (StepChk_Ctrdg_Flag > 0)
              {
                Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 1;
              }
              if (Sample_Cnt > STARMag_Remain)
              {
                if (StepChk_PKBead_Flag > 0)
                {
                  if (StepChk_PKBead_Flag > 1)
                  {
                    Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 3;
                  }
                  else
                  {
                    Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 2;
                  }
                }
                if (StepChk_IC_Flag > 0)
                {
                  Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + Used_IC_No;
                }
              }
              else
              {
                if (StepChk_PKBead_Flag > 0)
                {
                  if (StepChk_PKBead_Flag > 1)
                  {
                    Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 2;
                  }
                  else
                  {
                    Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 1;
                  }
                }
                if (StepChk_IC_Flag > 0)
                {
                  Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + Used_IC_No;
                }
              }
            }
          }
          if (file2_Extraction_Kit == 11)
          {
            if (Sample_Cnt <= STARMag_Remain)
            {
              Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 4;
            }
            else
            {
              Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 8;
            }
          }
        }
      }
      if (STEP == 6)
      {
        if (Chk_Tip_Usage_1mL_zero != 0)
        {
          if (fileB_Thinprep == "true")
          {
            if (StepChk_Ctrdg_Flag > 0)
            {
              Tip_Usage_1ml_Thinprep = Tip_Usage_1ml_Thinprep + 1;
            }
          }
          else
          {
            if (StepChk_Ctrdg_Flag > 0)
            {
              Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 1;
            }
            if (Sample_Cnt > STARMag_Remain)
            {
              if (StepChk_Bead_Flag > 0)
              {
                if (StepChk_PKBead_Flag > 0)
                {
                  if (StepChk_PKBead_Flag > 1)
                  {
                    Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 3;
                  }
                  else
                  {
                    Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 2;
                  }
                }
              }
              if (StepChk_IC_Flag > 0)
              {
                Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + Used_IC_No;
              }
            }
            else
            {
              if (StepChk_Bead_Flag > 0)
              {
                if (StepChk_PKBead_Flag > 0)
                {
                  if (StepChk_PKBead_Flag > 1)
                  {
                    Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 2;
                  }
                  else
                  {
                    Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + 1;
                  }
                }
              }
              if (StepChk_IC_Flag > 0)
              {
                Tip_Usage_1ml_Full = Tip_Usage_1ml_Full + Used_IC_No;
              }
            }
          }
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    Total_PPC_No = 0;
    if (file2_Set_No == 1)
    {
      Total_PPC_No = file2_PPC_No + file7_PPC_No + file9_PPC_No + file11_PPC_No;
    }
    else
    {
      Total_PPC_No = file2_PPC_No;
    }
    if (Use_All_Tips_Thinprep > 0)
    {
      dialogHandle_388.SetOutput(Translate("1 ml_Thinprep Tips Required : "), Tip_Usage_1ml_Thinprep, Translate("  /  Current Tips Remaining : "), TipsOnDeck_Thinprep, "\n");
      dialogHandle_388.ShowOutput(Translate("Required Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    else
    {
      if (Use_All_Tips_Full > 0)
      {
        if (Use_300ul_Tips > 0)
        {
          if (Use_50ul_Tips > 0)
          {
            dialogHandle_397.SetOutput(Translate("1 ml Tips Required : "), Tip_Usage_1ml_Full, Translate("  /  Current Tips Remaining : "), TipsOnDeck_New_Full, "\n", Translate("300 ul Tips Required : "), Tip_Usage_300ul, Translate("  /  Current Tips Remaining : "), TipsOnDeck_300, "\n", Translate("50 ul Tips Required : "), Tip_Usage_50ul, Translate("  /  Current Tips Remaining : "), TipsOnDeck_50, "\n");
            dialogHandle_397.ShowOutput(Translate("Required Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
          else
          {
            dialogHandle_392.SetOutput(Translate("1 ml Tips Required : "), Tip_Usage_1ml_Full, Translate("  /  Current Tips Remaining : "), TipsOnDeck_New_Full, "\n", Translate("300 ul Tips Required : "), Tip_Usage_300ul, Translate("  /  Current Tips Remaining : "), TipsOnDeck_300, "\n");
            dialogHandle_392.ShowOutput(Translate("Required Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
        }
        else
        {
          if (Use_50ul_Tips > 0)
          {
            dialogHandle_396.SetOutput(Translate("1 ml Tips Required : "), Tip_Usage_1ml_Full, Translate("  /  Current Tips Remaining : "), TipsOnDeck_New_Full, "\n", Translate("50 ul Tips Required : "), Tip_Usage_50ul, Translate("  /  Current Tips Remaining : "), TipsOnDeck_50, "\n");
            dialogHandle_396.ShowOutput(Translate("Required Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
          else
          {
            dialogHandle_395.SetOutput(Translate("1 ml Tips Required : "), Tip_Usage_1ml_Full, Translate("  /  Current Tips Remaining : "), TipsOnDeck_New_Full, "\n");
            dialogHandle_395.ShowOutput(Translate("Required Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
        }
      }
      else
      {
        if (Use_300ul_Tips > 0)
        {
          if (Use_50ul_Tips > 0)
          {
            dialogHandle_394.SetOutput(Translate("300 ul Tips Required : "), Tip_Usage_300ul, Translate("  /  Current Tips Remaining : "), TipsOnDeck_300, "\n", Translate("50 ul Tips Required : "), Tip_Usage_50ul, Translate("  /  Current Tips Remaining : "), TipsOnDeck_50, "\n");
            dialogHandle_394.ShowOutput(Translate("Required Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
          else
          {
            dialogHandle_389.SetOutput(Translate("300 ul Tips Required : "), Tip_Usage_300ul, Translate("  /  Current Tips Remaining : "), TipsOnDeck_300, "\n");
            dialogHandle_389.ShowOutput(Translate("Required Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
        }
        else
        {
          if (Use_50ul_Tips > 0)
          {
            dialogHandle_391.SetOutput(Translate("50 ul Tips Required : "), Tip_Usage_50ul, Translate("  /  Current Tips Remaining : "), TipsOnDeck_50, "\n");
            dialogHandle_391.ShowOutput(Translate("Required Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
        }
      }
    }
    if (Use_All_Tips_Full > 0)
    {
      if (Tip_Usage_1ml_Full <= 672)
      {
        if (TipsOnDeck_New_Full < Tip_Usage_1ml_Full)
        {
          dialogHandle_377.SetOutput(Translate("There are not enough tips on the deck."), Translate(""), "\n", Translate("To process "), Sample_Cnt, Translate(" samples, you will need "), Tip_Usage_1ml_Full, Translate("ea 1000ul tips in the Tip Carrier."), "\n", Translate("Please add more tips and press 'OK' button to restart the method."));
          dialogHandle_377.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          TipCount::Edit2(seq_All_Tips_Full, Translate("All_Tips_Full_Counter"), subInstrument, 999);
          TipsOnDeck_New_Full = seq_All_Tips_Full.GetCount();
          Trace ("TipsOnDeck_New_Full = ", TipsOnDeck_New_Full);
          if (TipsOnDeck_New_Full < Tip_Usage_1ml_Full)
          {
            dialogHandle_382.SetOutput(Translate("There are not enough tips on the deck."), Translate("Method will abort."));
            if( 0 == dialogHandle_382.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_382.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_382.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
      }
      else
      {
        if (TipsOnDeck_New_Full < Tip_Usage_1ml_Full)
        {
          dialogHandle_373.SetOutput(Translate("There are not enough 1 mL tips on the deck to ensure the current operation is completely performed."), "\n", Translate("Please add more 1 mL tips, when the instrument is stopped and alarmed."));
          dialogHandle_373.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        }
      }
    }
    if (Use_All_Tips_Thinprep > 0)
    {
      if (Tip_Usage_1ml_Thinprep <= 96)
      {
        if (TipsOnDeck_Thinprep < Tip_Usage_1ml_Thinprep)
        {
          dialogHandle_379.SetOutput(Translate("There are not enough tips on the deck."), Translate(""), "\n", Translate("To process "), Sample_Cnt, Translate(" samples, you will need "), Tip_Usage_1ml_Thinprep, Translate("ea 1000ul tips in the Tip Carrier."), "\n", Translate("Please add more tips and press 'OK' button to restart the method."));
          dialogHandle_379.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          TipCount::Edit2(seq_All_Tips_Thinprep, Translate("All_Tips_Thinprep_Counter"), subInstrument, 999);
          TipsOnDeck_Thinprep = seq_All_Tips_Thinprep.GetCount();
          Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
          if (TipsOnDeck_Thinprep < Tip_Usage_1ml_Thinprep)
          {
            dialogHandle_383.SetOutput(Translate("There are not enough tips on the deck."), Translate("Method will abort."));
            if( 0 == dialogHandle_383.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_383.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_383.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
      }
      else
      {
        if (TipsOnDeck_Thinprep < Tip_Usage_1ml_Thinprep)
        {
          dialogHandle_386.SetOutput(Translate("There are not enough 1 mL tips_Thinprep on the deck to ensure the current operation is completely performed."), "\n", Translate("Please add more 1 mL tips_Thinprep, when the instrument is stopped and alarmed."));
          dialogHandle_386.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        }
      }
    }
    if (Use_300ul_Tips > 0)
    {
      if (Tip_Usage_300ul <= 288)
      {
        if (TipsOnDeck_300 < Tip_Usage_300ul)
        {
          dialogHandle_374.SetOutput(Translate("There are not enough tips on the deck."), Translate(""), "\n", Translate("To process "), Sample_Cnt, Translate(" samples, you will need "), Tip_Usage_300ul, Translate("ea 300ul tips in the Tip Carrier."), "\n", Translate("Please add more tips and press 'OK' button to restart the method."));
          dialogHandle_374.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          TipCount::Edit2(seq_300ul_Tips, Translate("All_300ul_Tips_Counter"), subInstrument, 999);
          TipsOnDeck_300 = seq_300ul_Tips.GetCount();
          Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
          if (TipsOnDeck_300 < Tip_Usage_300ul)
          {
            dialogHandle_387.SetOutput(Translate("There are not enough tips on the deck."), Translate("Method will abort."));
            if( 0 == dialogHandle_387.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_387.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_387.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
      }
      else
      {
        if (TipsOnDeck_300 < Tip_Usage_300ul)
        {
          dialogHandle_380.SetOutput(Translate("There are not enough 300 uL tips on the deck to ensure the current operation is completely performed."), "\n", Translate("Please add more 300 uL tips, when the instrument is stopped and alarmed."));
          dialogHandle_380.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        }
      }
    }
    if (Use_50ul_Tips > 0)
    {
      if (Tip_Usage_50ul <= 96)
      {
        if (TipsOnDeck_50 < Tip_Usage_50ul)
        {
          dialogHandle_390.SetOutput(Translate("There are not enough tips on the deck."), Translate(""), "\n", Translate("To process "), Total_PPC_No, Translate(" Positive Control, you will need "), Tip_Usage_50ul, Translate("ea 50ul tips in the Tip Carrier."), "\n", Translate("Please add more tips and press 'OK' button to restart the method."));
          dialogHandle_390.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          TipCount::Edit2(seq_50ul_Tips, Translate("All_50ul_Tips_Counter"), subInstrument, 999);
          TipsOnDeck_50 = seq_50ul_Tips.GetCount();
          Trace ("TipsOnDeck_50 = ", TipsOnDeck_50);
          if (TipsOnDeck_50 < Tip_Usage_50ul)
          {
            dialogHandle_393.SetOutput(Translate("There are not enough tips on the deck."), Translate("Method will abort."));
            if( 0 == dialogHandle_393.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_393.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_393.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
      }
      else
      {
        if (TipsOnDeck_50 < Tip_Usage_50ul)
        {
          dialogHandle_400.SetOutput(Translate("There are not enough 50 uL tips on the deck to ensure the current operation is completely performed."), "\n", Translate("Please add more 50 uL tips, when the instrument is stopped and alarmed."));
          dialogHandle_400.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        }
      }
    }
    if (Sample_Cnt_PRODUCT_002 == 0)
    {
      if (Use_All_Tips_Full > 0)
      {
        if (TipsOnDeck_New_Full < Tip_Usage_1ml_Full)
        {
          dialogHandle_384.SetOutput(Translate("There are not enough tips on the deck."), Translate(""), "\n", Translate("To process "), Sample_Cnt, Translate(" samples, you will need "), Tip_Usage_1ml_Full, Translate("ea 1000ul tips in the Tip Carrier."), "\n", Translate("Please add more tips and press 'OK' button to restart the method."));
          dialogHandle_384.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          TipCount::Edit2(seq_All_Tips_Full, Translate("All_Tips_Full_Counter"), subInstrument, 999);
          TipsOnDeck_New_Full = seq_All_Tips_Full.GetCount();
          Trace ("TipsOnDeck_New_Full = ", TipsOnDeck_New_Full);
          if (TipsOnDeck_New_Full < Tip_Usage_1ml_Full)
          {
            dialogHandle_381.SetOutput(Translate("There are not enough tips on the deck."), Translate("Method will abort."));
            if( 0 == dialogHandle_381.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_381.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_381.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
      }
      if (Use_All_Tips_Thinprep > 0)
      {
        if (TipsOnDeck_Thinprep < Tip_Usage_1ml_Thinprep)
        {
          dialogHandle_376.SetOutput(Translate("There are not enough tips on the deck."), Translate(""), "\n", Translate("To process "), Sample_Cnt, Translate(" samples, you will need "), Tip_Usage_1ml_Thinprep, Translate("ea 1000ul tips in the Tip Carrier."), "\n", Translate("Please add more tips and press 'OK' button to restart the method."));
          dialogHandle_376.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          TipCount::Edit2(seq_All_Tips_Thinprep, Translate("All_1000ul_Thinprep_Tips_Counter"), subInstrument, 999);
          TipsOnDeck_Thinprep = seq_All_Tips_Thinprep.GetCount();
          Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
          if (TipsOnDeck_Thinprep < Tip_Usage_1ml_Thinprep)
          {
            dialogHandle_375.SetOutput(Translate("There are not enough tips on the deck."), Translate("Method will abort."));
            if( 0 == dialogHandle_375.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_375.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_375.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
      }
      if (Use_300ul_Tips > 0)
      {
        if (TipsOnDeck_300 < Tip_Usage_300ul)
        {
          dialogHandle_385.SetOutput(Translate("There are not enough tips on the deck."), Translate(""), "\n", Translate("To process "), Sample_Cnt, Translate(" samples, you will need "), Tip_Usage_300ul, Translate("ea 300ul tips in the Tip Carrier."), "\n", Translate("Please add more tips and press 'OK' button to restart the method."));
          dialogHandle_385.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          TipCount::Edit2(seq_300ul_Tips, Translate("All_300ul_Tips_Counter"), subInstrument, 999);
          TipsOnDeck_300 = seq_300ul_Tips.GetCount();
          Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
          if (TipsOnDeck_300 < Tip_Usage_300ul)
          {
            dialogHandle_378.SetOutput(Translate("There are not enough tips on the deck."), Translate("Method will abort."));
            if( 0 == dialogHandle_378.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_378.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_378.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
      }
      if (Use_50ul_Tips > 0)
      {
        if (TipsOnDeck_50 < Tip_Usage_50ul)
        {
          dialogHandle_398.SetOutput(Translate("There are not enough tips on the deck."), Translate(""), "\n", Translate("To process "), Total_PPC_No, Translate(" Positive Control, you will need "), Tip_Usage_50ul, Translate("ea 50ul tips in the Tip Carrier."), "\n", Translate("Please add more tips and press 'OK' button to restart the method."));
          dialogHandle_398.ShowOutput(Translate("Not Enough Tips on Deck"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          TipCount::Edit2(seq_50ul_Tips, Translate("All_50ul_Tips_Counter"), subInstrument, 999);
          TipsOnDeck_50 = seq_50ul_Tips.GetCount();
          Trace ("TipsOnDeck_50 = ", TipsOnDeck_50);
          if (TipsOnDeck_50 < Tip_Usage_50ul)
          {
            dialogHandle_399.SetOutput(Translate("There are not enough tips on the deck."), Translate("Method will abort."));
            if( 0 == dialogHandle_399.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_399.ShowOutput(Translate("Method Aborted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_399.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            abort;
          }
        }
      }
    }
  }
} // library namespace
