global device NimbusChannel ("demo_HBV_masterMix_Nimbus.lay", "NimbusChannel", hslTrue);
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLTipCountingNimbusLib.hsl" }
#include "demo_HBV_masterMix_Nimbus.res"
variable stringPipetteVariable;
variable intVolumeWater_default;
variable intVolumeMasterMix_aspirate;
variable intNumberOfSample;
variable all_tips_1000ul_full_counter;
variable intVolumeSample_default;
variable intSampleEndPosition;
variable intVolumeIC_default;
variable intVolumeQS_default;
variable intCurrentPosition;
variable intVolumeMasterMix_aspirate_temp;
variable loopCounter_DW96_masterMix;
variable intVolumeIC_aspirate;
variable loopCounter2;
variable intVoumeIC_default;
variable intEndPosition_sample_1;
variable i;
variable intCurrentPosition_sample;
variable loopCounter3;
variable loopCounter4;
variable intVolumeMasterMix_default;
variable file3_No_Sample;
variable loopCounter1;
file file3;
variable all_tips_300ul_full_counter;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslFalse);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 1);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    if(0){
      {
        	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
      }
    }
    file3.AddField("No#Sample", file3_No_Sample, hslFloat);
    if( 0 == file3.Open("C:\\Users\\Admin\\OneDrive - CONG TY TNHH THIET BI Y TE PHUONG DONG\\0work\\0MM\\HAMILTON_NIMBUS\\Nimbus.xls" + " " + "Master$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Users\\Admin\\OneDrive - CONG TY TNHH THIET BI Y TE PHUONG DONG\\0work\\0MM\\HAMILTON_NIMBUS\\Nimbus.xls", "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file3.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file3.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        intNumberOfSample = file3_No_Sample;
      }
    }
    if( 0 != file3.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file3.RemoveFields();
    intVolumeMasterMix_default = 30;
    intVolumeQS_default = 20;
    intVolumeSample_default = 20;
    intVolumeWater_default = 20;
    intVolumeIC_default = 2;
    stringPipetteVariable = Translate("");
    all_tips_1000ul_full_counter = Translate("0");
    TipCount1::Edit2(NimbusChannel.All_1000ul_Tips, all_tips_1000ul_full_counter, NimbusChannel, 300);
    all_tips_300ul_full_counter = Translate("0");
    TipCount1::Edit2(NimbusChannel.All_300ul_Tips, all_tips_300ul_full_counter, NimbusChannel, 300);
    intSampleEndPosition = intNumberOfSample + 6;
    intVolumeMasterMix_aspirate = intVolumeMasterMix_default * intSampleEndPosition;
    if (intSampleEndPosition > 66)
    {
      stringPipetteVariable = Translate("1110");
      intVolumeMasterMix_aspirate_temp = intVolumeMasterMix_aspirate / 3;
      intVolumeMasterMix_aspirate = intVolumeMasterMix_aspirate_temp + 20;
      {
        	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
      }
      NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
    }
    else
    {
      if (intSampleEndPosition > 30)
      {
        stringPipetteVariable = Translate("1100");
        intVolumeMasterMix_aspirate_temp = intVolumeMasterMix_aspirate / 2;
        intVolumeMasterMix_aspirate = intVolumeMasterMix_aspirate_temp + 15;
        {
          	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
        }
        NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
      }
      else
      {
        stringPipetteVariable = Translate("1000");
        {
          	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
        }
        NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
      }
    }
    {
      loopCounter_DW96_masterMix = 0;
      while (
         (NimbusChannel.demo_whiteStrip_all.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, NimbusChannel.demo_whiteStrip_all, 1);
        loopCounter_DW96_masterMix = loopCounter_DW96_masterMix + 1;
        NimbusChannel._5D3B503A_1069_44C1_9284_266B7CC0D14C("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"); // Dispense
        intCurrentPosition = NimbusChannel.demo_whiteStrip_all.GetCurrentPosition();
        if (intCurrentPosition > intSampleEndPosition)
        {
          break;
        }
        if (
           (NimbusChannel.demo_whiteStrip_all.GetCurrentPosition() > 0 && NimbusChannel.demo_whiteStrip_all.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      NimbusChannel.demo_whiteStrip_all.SetMax(NimbusChannel.demo_whiteStrip_all.GetTotal());
      NimbusChannel.demo_whiteStrip_all.SetCurrentPosition(1);
    }
    {
      	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
    }
    intVolumeIC_aspirate = intVoumeIC_default * 6;
    {
      	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
    }
    NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
    {
      loopCounter2 = 0;
      while (
         (NimbusChannel.demo_whiteStrip_IC.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, NimbusChannel.demo_whiteStrip_IC, 1);
        loopCounter2 = loopCounter2 + 1;
        NimbusChannel._5D3B503A_1069_44C1_9284_266B7CC0D14C("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"); // Dispense
        if (
           (NimbusChannel.demo_whiteStrip_IC.GetCurrentPosition() > 0 && NimbusChannel.demo_whiteStrip_IC.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      NimbusChannel.demo_whiteStrip_IC.SetMax(NimbusChannel.demo_whiteStrip_IC.GetTotal());
      NimbusChannel.demo_whiteStrip_IC.SetCurrentPosition(1);
    }
    {
      	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
    }
    {
      	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
    }
    NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
    NimbusChannel._5D3B503A_1069_44C1_9284_266B7CC0D14C("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"); // Dispense
    {
      	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
    }
    {
      	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
    }
    NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
    NimbusChannel._5D3B503A_1069_44C1_9284_266B7CC0D14C("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"); // Dispense
    {
      	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
    }
    {
      	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
    }
    NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
    NimbusChannel._5D3B503A_1069_44C1_9284_266B7CC0D14C("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"); // Dispense
    {
      	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
    }
    i = 0;
    intEndPosition_sample_1 = 1;
    //find pipette varaiable
    i=intNumberOfSample%4;
    intEndPosition_sample_1=intNumberOfSample-i;
    {
      loopCounter3 = 0;
      while (
         (NimbusChannel.demo_DW96_samples.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, NimbusChannel.demo_DW96_samples, 1);
        loopCounter3 = loopCounter3 + 1;
        {
          	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
        }
        NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
        NimbusChannel._5D3B503A_1069_44C1_9284_266B7CC0D14C("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"); // Dispense
        {
          	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
        }
        intCurrentPosition_sample = NimbusChannel.demo_DW96_samples.GetCurrentPosition();
        if (intCurrentPosition_sample > intEndPosition_sample_1)
        {
          MECC::TraceComment(Translate("loop break"));
          break;
        }
        if (
           (NimbusChannel.demo_DW96_samples.GetCurrentPosition() > 0 && NimbusChannel.demo_DW96_samples.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      NimbusChannel.demo_DW96_samples.SetMax(NimbusChannel.demo_DW96_samples.GetTotal());
    }
    if(i==4){stringPipetteVariable="1111";}
    if(i==3){stringPipetteVariable="1110";}
    if(i==2){stringPipetteVariable="1100";}
    if(i==1){stringPipetteVariable="1000";}
    {
      loopCounter4 = 0;
      while (
         (NimbusChannel.demo_DW96_samples.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, NimbusChannel.demo_DW96_samples, 1);
        loopCounter4 = loopCounter4 + 1;
        {
          	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
        }
        NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
        NimbusChannel._5D3B503A_1069_44C1_9284_266B7CC0D14C("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"); // Dispense
        {
          	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
        }
        intCurrentPosition_sample = NimbusChannel.demo_DW96_samples.GetCurrentPosition();
        if (intCurrentPosition_sample > intNumberOfSample)
        {
          MECC::TraceComment(Translate("loop break"));
          break;
        }
        if (
           (NimbusChannel.demo_DW96_samples.GetCurrentPosition() > 0 && NimbusChannel.demo_DW96_samples.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      NimbusChannel.demo_DW96_samples.SetMax(NimbusChannel.demo_DW96_samples.GetTotal());
      NimbusChannel.demo_DW96_samples.SetCurrentPosition(1);
    }
    {
      	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
    }
    TipCount1::Write2(NimbusChannel.All_1000ul_Tips, all_tips_1000ul_full_counter, NimbusChannel);
    TipCount1::Write2(NimbusChannel.All_300ul_Tips, all_tips_300ul_full_counter, NimbusChannel);
  } }
