 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLTipCountingNimbusLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "SubMethodLib\\Extraction_NIMBUS_v6.hs_" }
 namespace _Method { #include "SubMethodLib\\PCR_Set_Up_NIMBUS_v6.hs_" }
#include "NIMBUS_v6.1.res"
variable file11_Plate;
variable file11_NC_No;
variable file9_Product_No;
variable file7_Rack;
variable file2_Product_No;
variable file2_WTC_No;
variable file11_Step;
variable file11_Product_Name;
variable file11_PC_No;
variable loopCounter9;
variable file2_Tube;
variable file7_Product_Name;
variable file9_Step;
variable file1_SimOn;
variable file7_Set_No;
variable file11_WTC_No;
variable file9_Product_Name;
variable file2_Extraction_Kit;
variable file7_Step;
variable Sample_Cnt_Ini;
variable file2_Rack;
variable Sample_Cnt_PRODUCT_001;
variable fileB_Barcode;
variable file7_Extraction_Kit;
variable file2_Plate;
variable file2_NC_No;
variable file2_Set_No;
variable Sample_Cnt_PRODUCT_002;
variable Sample_Cnt_Flag;
variable file7_Product_No;
variable Sample_Cnt;
variable Sample_Cnt_PRODUCT_003;
variable file2_PC_No;
variable Sample_Cnt_PRODUCT_004;
variable file11_Set_No;
variable file9_WTC_No;
variable file2_Step;
variable file1_User;
variable file7_Plate;
variable file7_NC_No;
variable file11_Tube;
variable file2_Code;
variable fileB_PRODUCT_1;
variable file9_Tube;
variable file9_Plate;
variable file9_NC_No;
variable file2_Clot;
variable file2_PCR_Barcode;
variable fileB_PRODUCT_2;
variable file7_PC_No;
variable file11_Product_No;
variable file11_Extraction_Kit;
variable fileB_PRODUCT_3;
variable file7_Tube;
variable file7_WTC_No;
variable file9_PC_No;
variable fileB_PRODUCT_4;
variable file11_Rack;
variable file9_Extraction_Kit;
variable Random_Access;
variable STARMag_Remain;
variable loopCounter5;
variable file9_Rack;
variable file9_Set_No;
variable file2_Product_Name;
file fileB;
file file2;
file file7;
file file9;
file file11;
dialog dialogHandle_1;
variable First_Position_PRODUCT_001;
variable First_Position_PRODUCT_002;
variable First_Position_PRODUCT_003;
variable First_Position_PRODUCT_004;
variable Strip_Cnt_PRODUCT_Total;
variable Strip_Cnt_PRODUCT_001;
variable Strip_Cnt_PRODUCT_002;
variable Strip_Cnt_PRODUCT_003;
variable Strip_Cnt_PRODUCT_004;
variable Use_All_Tips;
variable loopCounter1;
variable file3_Tip_Sequence;
variable Use_300ul_Tips;
file file3;
variable HHS1;
variable ChPattern_Remain;
variable ChPattern_Chk;
variable ChPattern_Remain2;
variable STEP;
variable Product_Name;
variable file4_Step_Name;
variable file4_Liquid_Class;
variable file4_Incu_Temp;
variable file4_Seq_Shaker_1;
variable file4_Seq_Shaker_2;
variable file4_PreAliq_Disp_Bottom_Height;
variable file4_Disp_Bottom_Height;
variable file4_Asp_ADC_On;
variable file4_PreAliq_Disp_cLLD_On;
variable file8_Deviation;
variable file4_Asp_cLLD_On;
variable file4_PreAliq_Disp_Submerge_Depth;
variable file4_Disp_Postmix_Vol;
variable file8_Deck_Site;
variable Step_Name;
variable file4_Asp_Base1;
variable file4_Disp_Postmix_ASD;
variable file4_Enable;
variable file4_Asp_Premix_Vol;
variable file4_Asp_Submerge_Depth;
variable file4_Asp_Premix_ASD;
variable file4_Disp_Base1;
variable file4_Disp_cLLD_On;
variable file4_Disp_Postmix_Cycle;
variable file4_Seq_Magnet_0;
variable file4_Liquid_Class_2;
variable file4_Asp_Base4;
variable file4_PreAliq_Volume;
variable file4_Disp_Submerge_Depth;
variable file4_Seq_Magnet_1;
variable file4_Incu_Time;
variable file4_Seq_Magnet_2;
variable file4_SubMethod;
variable file4_Asp_Premix_Cycle;
variable file4_PreAliq_Retract_Distance;
variable file4_Disp_Base4;
variable loopCounter2;
variable file4_Disp_position;
variable file4_Incu_Speed;
variable file4_Asp_position;
variable file4_Asp_Base8;
variable file4_Start_Location;
variable file4_Check_DWP;
variable file4_Reuse_Tip;
variable file4_Tip_Sequence;
variable Adapter_Criterion;
variable file4_Volume;
variable file4_Asp_Bottom_Height;
variable file4_Asp_Retract_Distance;
variable file4_Disp_Base8;
variable Adapter_PCR_HtChk;
variable file4_Asp_position_2nd;
variable file4_Disp_Retract_Distance;
variable file4_Target_Location;
variable file4_Seq_Shaker_0;
variable file4_Seq_Shaker_1_Bead;
file file4;
file file8;
variable Clot_Occurs;
variable para_Volume;
variable para_Incu_Speed;
variable para_PreAliq_Disp_cLLD_On;
variable para_Incu_Time;
variable VolChk_LabwareID_1;
variable VolChk_PositionID_1;
variable para_Asp_Premix_Vol;
variable para_Liquid_Class;
variable Loop_Seq_0;
variable VolChk_LabwareID_2;
variable VolChk_PositionID_2;
variable para_Asp_Submerge_Depth;
variable para_Asp_Premix_ASD;
variable para_Disp_Postmix_Cycle;
variable para_PreAliq_Volume;
variable para_Reuse_Tip;
variable Loop_Seq_1;
variable para_Check_DWP;
variable para_Liquid_Class_2;
variable Loop_Seq_2;
variable SeqGetTotal_para_Disp_position;
variable para_Disp_Retract_Distance;
variable para_Asp_Bottom_Height;
variable para_Asp_ADC_On;
variable SeqGetTotal_NC;
variable TubeType;
variable para_Incu_Temp;
variable para_Asp_cLLD_On;
variable para_Disp_Submerge_Depth;
variable para_Disp_Postmix_Vol;
variable para_Disp_cLLD_On;
variable para_Disp_Postmix_ASD;
variable para_PreAliq_Retract_Distance;
variable Tub_2_Remain;
variable para_Asp_Retract_Distance;
variable para_PreAliq_Disp_Bottom_Height;
variable para_PreAliq_Disp_Submerge_Depth;
variable para_Disp_Bottom_Height;
variable para_Asp_Premix_Cycle;
sequence para_Disp_Base4;
sequence Seq_ShakerModified;
sequence para_Asp_Base4;
sequence para_Disp_Base8;
sequence para_Asp_position_2nd;
sequence Seq_Shaker_1_Bead;
sequence para_Asp_Base8;
sequence seq_Liquidwaste;
sequence para_Start_Location;
sequence para_Target_Location;
sequence para_Seq_Magnet_0;
sequence para_Seq_Magnet_1;
sequence para_Seq_Magnet_2;
sequence Seq_MagnetModified;
sequence para_Disp_Base1;
sequence para_Asp_Base1;
sequence para_Disp_position;
sequence para_Tips;
sequence para_Asp_position;
dialog dialogHandle_2;
variable file2_IC_No;
variable file7_IC_No;
variable file9_IC_No;
variable file11_IC_No;
variable IC_Cnt_1st;
variable IC_Cnt_2nd;
variable SeqGetTotal_para_Asp_position_2nd;
variable PLATE;
variable SeqGetTotal_para_Asp_position;
sequence seq_Tub_3;
sequence Seq_Shaker_0;
sequence seq_Disp_Sample_B;
sequence seq_Disp_MM_C;
sequence seq_All_Samples;
sequence seq_Tub_4;
sequence Seq_Shaker_1;
sequence seq_Disp_Sample_C;
sequence seq_Disp_MM_D;
sequence seq_Bead_2;
sequence para_Seq_Shaker_0;
sequence seq_Tub_5;
sequence Seq_Shaker_2;
sequence seq_DWP_Mgt_Base1;
sequence seq_Disp_Sample_D;
sequence para_Seq_Shaker_1;
sequence seq_Tub_6;
sequence seq_Shaker_8Base;
sequence para_Seq_Shaker_2;
sequence seq_Tub_1_2;
sequence seq_Tub_2_2;
sequence seq_DWP_Mgt_Base4;
sequence seq_Tub_3_2;
sequence Seq_SampleRacks;
sequence seq_Tub_4_2;
sequence seq_Bead;
sequence seq_Tub_5_2;
sequence para_Seq_Shaker_1_Bead;
sequence seq_Tub_6_2;
sequence Seq_Magnet_0;
sequence seq_DWP_Mgt_Base8;
sequence seq_Asp_Sample_A;
sequence Seq_Magnet_1;
sequence seq_Asp_Sample_B;
sequence Seq_Magnet_2;
sequence seq_Asp_Sample_C;
sequence seq_Asp_Sample_D;
sequence seq_Shaker_1Base;
sequence seq_PK;
sequence seq_1st_tube;
sequence seq_Tub_1;
sequence seq_Each_Samples;
sequence seq_Disp_MM_A;
sequence seq_2nd_tube;
sequence seq_Tub_2;
sequence seq_Shaker_4Base;
sequence seq_Disp_Sample_A;
sequence seq_Disp_MM_B;
sequence para_BB_Position_2nd;
sequence para_Bead_Position_2nd;
sequence para_BB_Position;
sequence para_Bead_Position;
variable Check_Grippers;
variable loopCounter25;
variable file2_SD_No;
variable file2_PC_NC;
variable file7_SD_No;
variable file9_SD_No;
variable file11_SD_No;
sequence seq_Disp_NC_A;
sequence seq_Disp_NC_B;
sequence seq_Disp_NC_C;
sequence seq_Disp_NC_D;
sequence seq_Disp;
sequence seq_Disp_1;
sequence seq_Disp_4;
sequence seq_Asp_cDNA_2nd;
sequence seq_Asp_cDNA_1st;
variable PCR_Remain_PRODUCT_001;
variable PCR_Remain_PRODUCT_002;
variable PCR_Remain_PRODUCT_003;
variable PCR_Remain_PRODUCT_004;
variable file9_PCR_Remain;
variable file2_PCR_Remain;
variable file7_PCR_Remain;
variable file11_PCR_Remain;
variable PCR_Remain_PRODUCT_001_1st_Tube;
variable PCR_Remain_PRODUCT_002_1st_Tube;
variable PCR_Remain_PRODUCT_003_1st_Tube;
variable PCR_Remain_PRODUCT_004_1st_Tube;
variable file4_No;
variable TipsOnDeck_300_start;
variable TipsOnDeck_1000_start;
variable TipsOnDeck_300_end;
variable Tip_1000ul;
variable TipsOnDeck_1000_end;
variable Tip_300ul;
variable TipsOnDeck_New;
variable TipsOnDeck_300;
variable file2_Asp_position_2nd;
variable file2_2X_Enzyme_Height;
variable file3_2X_Enzyme_Height;
variable File8_Loopcounter1;
variable HHS_Zvariation;
variable Magnet_Zvariation;
variable File8_Loopcounter2;
variable Return_PlateDetectHeight;
variable Check_DWP;
variable Return_PlateExist;
variable Return_PlateDetectHeight_Raw;
variable fileB_PRODUCT_7;
variable fileB_PRODUCT_8;
variable fileB_PRODUCT_9;
variable Sample_Cnt_PRODUCT_010;
variable fileB_PRODUCT_10;
variable Sample_Cnt_PRODUCT_011;
variable fileB_PRODUCT_11;
variable Sample_Cnt_PRODUCT_012;
variable fileB_PRODUCT_12;
variable Sample_Cnt_PRODUCT_005;
variable Sample_Cnt_PRODUCT_006;
variable Sample_Cnt_PRODUCT_007;
variable Sample_Cnt_PRODUCT_008;
variable Sample_Cnt_PRODUCT_009;
variable fileB_PRODUCT_5;
variable fileB_PRODUCT_6;
variable file13_Step;
variable file13_NC_No;
variable PCR_Remain_PRODUCT_005_1st_Tube;
variable file13_Product_Name;
variable file13_PC_No;
variable file13_Extraction_Kit;
variable file13_Set_No;
variable file13_SD_No;
variable PCR_Remain_PRODUCT_005;
variable file13_Product_No;
variable file13_PCR_Remain;
variable file13_IC_No;
variable file13_WTC_No;
file file13;
variable file15_Set_No;
variable file15_NC_No;
variable file15_Product_Name;
variable file15_PC_No;
variable PCR_Remain_PRODUCT_006;
variable file15_SD_No;
variable PCR_Remain_PRODUCT_006_1st_Tube;
variable file15_WTC_No;
variable file15_Extraction_Kit;
variable file15_Step;
variable file15_Product_No;
variable file15_IC_No;
variable file15_PCR_Remain;
file file15;
variable file17_Extraction_Kit;
variable file17_NC_No;
variable file17_Product_Name;
variable file17_PC_No;
variable file17_WTC_No;
variable PCR_Remain_PRODUCT_007;
variable file17_Product_No;
variable file17_SD_No;
variable file17_PCR_Remain;
variable file17_Set_No;
variable file17_Step;
variable PCR_Remain_PRODUCT_007_1st_Tube;
variable file17_IC_No;
file file17;
variable file19_Product_No;
variable file19_IC_No;
variable PCR_Remain_PRODUCT_008_1st_Tube;
variable file19_PCR_Remain;
variable file19_WTC_No;
variable file19_NC_No;
variable file19_PC_No;
variable file19_Set_No;
variable file19_Product_Name;
variable PCR_Remain_PRODUCT_008;
variable file19_SD_No;
variable file19_Step;
variable file19_Extraction_Kit;
file file19;
variable PCR_Remain_PRODUCT_010;
variable file21_WTC_No;
variable file21_IC_No;
variable file21_Product_No;
variable file21_Step;
variable file21_PCR_Remain;
variable PCR_Remain_PRODUCT_009_1st_Tube;
variable file21_NC_No;
variable file21_Set_No;
variable file21_Extraction_Kit;
variable file21_PC_No;
variable file21_Product_Name;
variable file21_SD_No;
variable PCR_Remain_PRODUCT_009;
file file21;
variable file23_Step;
variable file23_Set_No;
variable file23_IC_No;
variable PCR_Remain_PRODUCT_010_1st_Tube;
variable file23_NC_No;
variable file23_PC_No;
variable file23_Product_No;
variable file23_SD_No;
variable file23_Product_Name;
variable file23_PCR_Remain;
variable file23_WTC_No;
variable file23_Extraction_Kit;
file file23;
variable PCR_Remain_PRODUCT_011;
variable file25_Product_No;
variable file25_IC_No;
variable file25_PCR_Remain;
variable file25_Extraction_Kit;
variable file25_WTC_No;
variable file25_NC_No;
variable file25_PC_No;
variable PCR_Remain_PRODUCT_011_1st_Tube;
variable file25_Product_Name;
variable file25_SD_No;
variable file25_Set_No;
variable file25_Step;
file file25;
variable PCR_Remain_PRODUCT_012;
variable file27_WTC_No;
variable file27_IC_No;
variable file27_Set_No;
variable file27_NC_No;
variable file27_PC_No;
variable file27_Product_No;
variable file27_Step;
variable file27_Extraction_Kit;
variable file27_SD_No;
variable file27_PCR_Remain;
variable file27_Product_Name;
variable PCR_Remain_PRODUCT_012_1st_Tube;
file file27;
variable IC_506_Flag;
variable IC_505_Flag;
variable IC_504_Flag;
variable IC_503_Flag;
variable IC_502_Flag;
variable IC_501_Flag;
variable file2_PPC_No;
variable file7_PPC_No;
variable file9_PPC_No;
variable file11_PPC_No;
variable Cur_Position_PPC;
variable para_PPC_No;
variable Cur_Position;
sequence seq_Disp_PPC_A;
sequence seq_Disp_PPC_B;
sequence seq_Disp_PPC_C;
sequence seq_Disp_PPC_D;
sequence seq_PPC_tube;
variable Cur_Tip_Position;
variable WB2_height;
variable loopCounter55;
variable No_Tip_Error_Flag;
variable No_Ctrdge_Error_Flag;
variable loopCounter70;
variable Ctrdge_height;
variable Copy_Tip_Sequence;
variable SubMethod_right;
variable loopCounter45;
variable StepChk_Ctrdg_Flag;
variable StepChk_WB2_Flag;
variable No_PK_Error_Flag;
variable StepChk_Chk;
variable Used_IC_No;
variable Use_IC1;
variable Use_IC2;
variable No_IC_Error_Flag;
variable loopCounterPKChk;
variable Use_IC3;
variable loopCounterICChk;
variable StepChk_Bead_Flag;
variable Use_IC4;
variable loopCounterBeadChk;
variable Use_IC5;
variable No_Bead_Error_Flag;
variable StepChk_PK_Flag;
variable Use_IC6;
variable ChPattern_Chk_IC_2nd;
variable StepChk_IC_Flag;
variable ChPattern_Chk_IC;
variable loopCounterICChk_2nd;
variable No_IC_Error_Flag_2nd;
variable file2_BarcodePlate;
global device NimbusChannel ("NIMBUS_v6.1.lay", "NimbusChannel", hslTrue);
variable file2_SW;
variable Use_1ch;
variable Use_2ch;
variable Use_3ch;
variable Use_4ch;
variable Cnt_Tip_pickup;
variable Cnt_picked_up_Tip;
variable Cnt_ChPattern_Chk_IC;
variable Cnt_ChPattern_Chk_IC_2nd;
variable Ht_Difference;
variable file10_PCR_Adaptor;
file file10;
variable file2_BarcodeDWP;
variable StepChk_WB1_Flag;
variable SW_version;
variable A_Kit_Flag;
dialog dialogHandle_3;
dialog dialogHandle_4;
dialog dialogHandle_5;
dialog dialogHandle_6;
dialog dialogHandle_7;
dialog dialogHandle_8;
dialog dialogHandle_9;
dialog dialogHandle_10;
dialog dialogHandle_11;
dialog dialogHandle_12;
dialog dialogHandle_13;
dialog dialogHandle_14;
dialog dialogHandle_15;
dialog dialogHandle_16;
dialog dialogHandle_17;
dialog dialogHandle_18;
dialog dialogHandle_19;
dialog dialogHandle_20;
dialog dialogHandle_21;
dialog dialogHandle_22;
dialog dialogHandle_23;
dialog dialogHandle_24;
dialog dialogHandle_25;
dialog dialogHandle_26;
dialog dialogHandle_27;
dialog dialogHandle_28;
dialog dialogHandle_29;
dialog dialogHandle_30;
dialog dialogHandle_31;
dialog dialogHandle_32;
dialog dialogHandle_33;
dialog dialogHandle_34;
dialog dialogHandle_35;
dialog dialogHandle_36;
dialog dialogHandle_37;
dialog dialogHandle_38;
dialog dialogHandle_39;
dialog dialogHandle_40;
dialog dialogHandle_41;
dialog dialogHandle_42;
dialog dialogHandle_43;
dialog dialogHandle_44;
dialog dialogHandle_45;
dialog dialogHandle_46;
dialog dialogHandle_47;
dialog dialogHandle_48;
dialog dialogHandle_49;
dialog dialogHandle_50;
dialog dialogHandle_51;
dialog dialogHandle_52;
dialog dialogHandle_53;
dialog dialogHandle_54;
dialog dialogHandle_55;
dialog dialogHandle_56;
sequence seq_PK_2ml;
sequence seq_PK_2ml_2;
dialog dialogHandle_57;
dialog dialogHandle_58;
dialog dialogHandle_59;
dialog dialogHandle_60;
dialog dialogHandle_61;
dialog dialogHandle_62;
dialog dialogHandle_63;
dialog dialogHandle_64;
dialog dialogHandle_65;
dialog dialogHandle_66;
dialog dialogHandle_67;
dialog dialogHandle_68;
dialog dialogHandle_69;
dialog dialogHandle_70;
dialog dialogHandle_71;
dialog dialogHandle_72;
dialog dialogHandle_73;
dialog dialogHandle_74;
dialog dialogHandle_75;
dialog dialogHandle_76;
dialog dialogHandle_77;
dialog dialogHandle_78;
dialog dialogHandle_79;
dialog dialogHandle_80;
dialog dialogHandle_81;
dialog dialogHandle_82;
dialog dialogHandle_83;
dialog dialogHandle_84;
dialog dialogHandle_85;
dialog dialogHandle_86;
dialog dialogHandle_87;
dialog dialogHandle_88;
dialog dialogHandle_89;
dialog dialogHandle_90;
dialog dialogHandle_91;
dialog dialogHandle_92;
dialog dialogHandle_93;
dialog dialogHandle_94;
dialog dialogHandle_95;
dialog dialogHandle_96;
dialog dialogHandle_97;
dialog dialogHandle_98;
dialog dialogHandle_99;
dialog dialogHandle_100;
dialog dialogHandle_101;
dialog dialogHandle_102;
dialog dialogHandle_103;
dialog dialogHandle_104;
dialog dialogHandle_105;
dialog dialogHandle_106;
dialog dialogHandle_107;
dialog dialogHandle_108;
dialog dialogHandle_109;
dialog dialogHandle_110;
dialog dialogHandle_111;
dialog dialogHandle_112;
dialog dialogHandle_113;
dialog dialogHandle_114;
dialog dialogHandle_115;
dialog dialogHandle_116;
dialog dialogHandle_117;
dialog dialogHandle_118;
dialog dialogHandle_119;
dialog dialogHandle_120;
dialog dialogHandle_121;
dialog dialogHandle_122;
dialog dialogHandle_123;
dialog dialogHandle_124;
dialog dialogHandle_125;
dialog dialogHandle_126;
dialog dialogHandle_127;
dialog dialogHandle_128;
dialog dialogHandle_129;
dialog dialogHandle_130;
dialog dialogHandle_131;
dialog dialogHandle_132;
dialog dialogHandle_133;
dialog dialogHandle_134;
dialog dialogHandle_135;
dialog dialogHandle_136;
dialog dialogHandle_137;
dialog dialogHandle_138;
dialog dialogHandle_139;
dialog dialogHandle_140;
dialog dialogHandle_141;
dialog dialogHandle_142;
dialog dialogHandle_143;
dialog dialogHandle_144;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable fileD_IC2;
    private variable fileD_IC3;
    private variable fileD_IC4;
    private variable fileD_IC5;
    private variable fileD_IC6;
    private variable fileD_IC1;
    private file fileD;
    EXTRACTION_NIMBUS_V6::_InitLibrary();
    PCR_SET_UP_NIMBUS_V6::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("********************************************** NIMBUS V6.00.000.000 ********************************************\nDate:  2017/12/29\nModified : OSJ, JNY, CJH, HSY, KIG"));
    MECC::TraceComment(Translate("******************************************** NIMBUS V6.00.001.000 ******************************************\nDate:  2018/04/20\nModified : HSY"));
    MECC::TraceComment(Translate("******************************************** NIMBUS V6.00.002.000 ******************************************\nDate:  2018/05/30\nModified : SJO"));
    MECC::TraceComment(Translate("******************************************** NIMBUS V6.00.005.000 ******************************************\nDate:  2018/10/30\nModified : CJH, HSY, KIG"));
    MECC::TraceComment(Translate("******************************************** NIMBUS V6.00.006.000 ******************************************\nDate:  2018/11/23\nModified : CJH"));
    MECC::TraceComment(Translate("******************************************** Launcher V6.00.007 ******************************************\nDate:  2018/12/28\nModified : CJH"));
    MECC::TraceComment(Translate("******************************************** Launcher V6.01.000 ******************************************\nDate:  2019/04/30\nModified : CJH, JEH, ITK"));
    MECC::TraceComment(Translate("******************************************** Launcher V6.02.000 ******************************************\nDate:  2019/08/31\nModified : JNY, HSY"));
    MECC::TraceComment(Translate("******************************************** Launcher V6.02.001 ******************************************\nDate:  2019/11/29\nModified : JNY"));
    MECC::TraceComment(Translate("******************************************** SARS-CoV-2 V1.00.000 ******************************************\nDate:  2020/09/25\nModified : CJH, HJY"));
    MECC::TraceComment(Translate("******************************************** SARS-CoV-2 V1.00.000 ******************************************\nDate:  2020/10/30\nModified : HSY"));
    MECC::TraceComment(Translate("******************************************** Launcher V6.02.006 ******************************************\nDate:  2020/12/10\nModified : GHJ, HJY"));
    MECC::TraceComment(Translate("******************************************** Launcher V6.02.007 ******************************************\nDate:  2021/03/15\nModified : GHJ, HJY"));
    MECC::TraceComment(Translate("******************************************** Launcher V6.02.008 ******************************************\nDate:  2021/06/15\nModified : YMH"));
    EXTRACTION_NIMBUS_V6::Check_version(SW_version);
    if (SW_version != "NEW")
    {
      abort;
    }
    PCR_SET_UP_NIMBUS_V6::Check_version(SW_version);
    if (SW_version != "NEW")
    {
      abort;
    }
    MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++\n+++++++++++++++ Initialize Nimbus +++++++++++++++\n+++++++++++++++++++++++++++++++++++++++++++"));
    {
      	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
    }
    file1_SimOn = Util::GetSimulationMode();
    file1_User = 0;
    fileB.AddField("Barcode", fileB_Barcode, hslString, 255);
    fileB.AddField("Product1", fileB_PRODUCT_1, hslString, 255);
    fileB.AddField("Product2", fileB_PRODUCT_2, hslString, 255);
    fileB.AddField("Product3", fileB_PRODUCT_3, hslString, 255);
    fileB.AddField("Product4", fileB_PRODUCT_4, hslString, 255);
    fileB.AddField("Product5", fileB_PRODUCT_5, hslString, 255);
    fileB.AddField("Product6", fileB_PRODUCT_6, hslString, 255);
    fileB.AddField("Product7", fileB_PRODUCT_7, hslString, 255);
    fileB.AddField("Product8", fileB_PRODUCT_8, hslString, 255);
    fileB.AddField("Product9", fileB_PRODUCT_9, hslString, 255);
    fileB.AddField("Product10", fileB_PRODUCT_10, hslString, 255);
    fileB.AddField("Product11", fileB_PRODUCT_11, hslString, 255);
    fileB.AddField("Product12", fileB_PRODUCT_12, hslString, 255);
    if( 0 == fileB.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "WorkList$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
    }
    {
      loopCounter5 = 0;
      while (
         (fileB.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == fileB.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Sample_Cnt_Flag = 0;
        if (fileB_PRODUCT_1 == "true")
        {
          Sample_Cnt_PRODUCT_001 = Sample_Cnt_PRODUCT_001 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_2 == "true")
        {
          Sample_Cnt_PRODUCT_002 = Sample_Cnt_PRODUCT_002 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_3 == "true")
        {
          Sample_Cnt_PRODUCT_003 = Sample_Cnt_PRODUCT_003 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_4 == "true")
        {
          Sample_Cnt_PRODUCT_004 = Sample_Cnt_PRODUCT_004 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_5 == "true")
        {
          Sample_Cnt_PRODUCT_005 = Sample_Cnt_PRODUCT_005 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_6 == "true")
        {
          Sample_Cnt_PRODUCT_006 = Sample_Cnt_PRODUCT_006 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_7 == "true")
        {
          Sample_Cnt_PRODUCT_007 = Sample_Cnt_PRODUCT_007 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_8 == "true")
        {
          Sample_Cnt_PRODUCT_008 = Sample_Cnt_PRODUCT_008 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_9 == "true")
        {
          Sample_Cnt_PRODUCT_009 = Sample_Cnt_PRODUCT_009 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_10 == "true")
        {
          Sample_Cnt_PRODUCT_010 = Sample_Cnt_PRODUCT_010 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_11 == "true")
        {
          Sample_Cnt_PRODUCT_011 = Sample_Cnt_PRODUCT_011 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_12 == "true")
        {
          Sample_Cnt_PRODUCT_012 = Sample_Cnt_PRODUCT_012 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (Sample_Cnt_Flag != 0)
        {
          Sample_Cnt = Sample_Cnt + 1;
        }
      }
    }
    if( 0 != fileB.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    fileB.RemoveFields();
    Sample_Cnt_Ini = Sample_Cnt;
    file2.AddField("Step", file2_Step, hslString, 255);
    file2.AddField("Product_No", file2_Product_No, hslString, 255);
    file2.AddField("Rack", file2_Rack, hslString, 255);
    file2.AddField("Tube", file2_Tube, hslString, 255);
    file2.AddField("Plate", file2_Plate, hslString, 255);
    file2.AddField("Product_Name", file2_Product_Name, hslString, 255);
    file2.AddField("Extraction_Kit", file2_Extraction_Kit, hslInteger);
    file2.AddField("PC_No", file2_PC_No, hslInteger);
    file2.AddField("NC_No", file2_NC_No, hslInteger);
    file2.AddField("SD_No", file2_SD_No, hslInteger);
    file2.AddField("WTC_No", file2_WTC_No, hslInteger);
    file2.AddField("IC_No", file2_IC_No, hslInteger);
    file2.AddField("Random_Access", Random_Access, hslInteger);
    file2.AddField("Extraction_Cartridge_Count", STARMag_Remain, hslInteger);
    file2.AddField("PCR_Cartridge_Count", file2_PCR_Remain, hslInteger);
    file2.AddField("Clot", file2_Clot, hslInteger);
    file2.AddField("PCR_Barcode", file2_PCR_Barcode, hslInteger);
    file2.AddField("Remaining_PCR", PCR_Remain_PRODUCT_001_1st_Tube, hslInteger);
    file2.AddField("Code", file2_Code, hslString, 255);
    file2.AddField("PC_NC", file2_PC_NC, hslInteger);
    file2.AddField("BarcodePlate", file2_BarcodePlate, hslInteger);
    file2.AddField("BarcodeDWP", file2_BarcodeDWP, hslInteger);
    file2.AddField("SW", file2_SW, hslInteger);
    if( 0 == file2.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "Setting$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
    }
    if( 0 == file2.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != file2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file2.RemoveFields();
    MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++\n+++++++++++++++ Experiment Information and Sample Count +++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    file2_Set_No = 1;
    if (file2_Product_No == "PRODUCT_ANY_001")
    {
      if (file2_Step == "STEP_003")
      {
        file2_Set_No = 1;
      }
      else
      {
        file2_Set_No = 2;
      }
    }
    if (file2_Product_No == "PRODUCT_ANY_006")
    {
      file2_Set_No = 2;
    }
    if (file2_Product_No == "PRODUCT_ALL_029")
    {
      file2_Set_No = 2;
    }
    if (file2_Product_No == "PRODUCT_ALL_030")
    {
      file2_Set_No = 2;
    }
    if (file2_Product_No == "PRODUCT_ALL_031")
    {
      file2_Set_No = 3;
    }
    PCR_Remain_PRODUCT_001 = file2_PCR_Remain;
    Trace ("SimOn = ", file1_SimOn);
    Trace ("Step = ", file2_Step);
    Trace ("Extraction Kit = ", file2_Extraction_Kit);
    Trace ("Rack Type = ", file2_Rack);
    Trace ("Tube Type = ", file2_Tube);
    Trace ("Plate = ", file2_Plate);
    Trace ("Random_Access = ", Random_Access);
    Trace ("Clot Error Handling On/Off = ", file2_Clot);
    Trace ("PCR Barcode On/off = ", file2_PCR_Barcode);
    Trace ("PC_NC Position = ", file2_PC_NC);
    Trace ("User Code = ", file2_Code);
    MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    file2_PPC_No = 0;
    file2_PPC_No = (file2_WTC_No + file2_SD_No + file2_PC_No);
    Trace ("Product = ", file2_Product_No);
    Trace ("Product Name = ", file2_Product_Name);
    Trace ("NC No = ", file2_NC_No);
    Trace ("WTC_No = ", file2_WTC_No);
    Trace ("SD_No = ", file2_SD_No);
    Trace ("PC_No = ", file2_PC_No);
    Trace ("PPC_No = ", file2_PPC_No);
    Trace ("Set_No = ", file2_Set_No);
    Trace ("PCR_Remain_PRODUCT_001 = ", PCR_Remain_PRODUCT_001);
    MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    if (Sample_Cnt_PRODUCT_002 != 0)
    {
      file7.AddField("Step", file7_Step, hslString, 255);
      file7.AddField("Product_No", file7_Product_No, hslString, 255);
      file7.AddField("Rack", file7_Rack, hslString, 255);
      file7.AddField("Tube", file7_Tube, hslString, 255);
      file7.AddField("Plate", file7_Plate, hslString, 255);
      file7.AddField("Product_Name", file7_Product_Name, hslString, 255);
      file7.AddField("Extraction_Kit", file7_Extraction_Kit, hslInteger);
      file7.AddField("PC_No", file7_PC_No, hslInteger);
      file7.AddField("NC_No", file7_NC_No, hslInteger);
      file7.AddField("SD_No", file7_SD_No, hslInteger);
      file7.AddField("WTC_No", file7_WTC_No, hslInteger);
      file7.AddField("IC_No", file7_IC_No, hslInteger);
      file7.AddField("Remaining_PCR", PCR_Remain_PRODUCT_002_1st_Tube, hslInteger);
      file7.AddField("PCR_Cartridge_Count", file7_PCR_Remain, hslInteger);
      if( 0 == file7.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 2;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file7.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file7.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file7.RemoveFields();
      file7_Set_No = 1;
      if (file7_Product_No == "PRODUCT_ANY_001")
      {
        file7_Set_No = 2;
      }
      if (file7_Product_No == "PRODUCT_ANY_006")
      {
        file7_Set_No = 2;
      }
      if (file7_Product_No == "PRODUCT_ALL_029")
      {
        file7_Set_No = 2;
      }
      if (file7_Product_No == "PRODUCT_ALL_030")
      {
        file7_Set_No = 2;
      }
      if (file7_Product_No == "PRODUCT_ALL_031")
      {
        file7_Set_No = 3;
      }
      PCR_Remain_PRODUCT_002 = file7_PCR_Remain;
      file7_PPC_No = 0;
      file7_PPC_No = (file7_WTC_No + file7_SD_No + file7_PC_No);
      Trace ("Product = ", file7_Product_No);
      Trace ("Product Name = ", file7_Product_Name);
      Trace ("NC_No = ", file7_NC_No);
      Trace ("WTC_No = ", file7_WTC_No);
      Trace ("SD_No = ", file7_SD_No);
      Trace ("PC_No = ", file7_PC_No);
      Trace ("PPC_No = ", file7_PPC_No);
      Trace ("Set_No = ", file7_Set_No);
      Trace ("PCR_Remain_PRODUCT_002 = ", PCR_Remain_PRODUCT_002);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_003 != 0)
    {
      file9.AddField("Step", file9_Step, hslString, 255);
      file9.AddField("Product_No", file9_Product_No, hslString, 255);
      file9.AddField("Rack", file9_Rack, hslString, 255);
      file9.AddField("Tube", file9_Tube, hslString, 255);
      file9.AddField("Plate", file9_Plate, hslString, 255);
      file9.AddField("Product_Name", file9_Product_Name, hslString, 255);
      file9.AddField("Extraction_Kit", file9_Extraction_Kit, hslInteger);
      file9.AddField("PC_No", file9_PC_No, hslInteger);
      file9.AddField("NC_No", file9_NC_No, hslInteger);
      file9.AddField("SD_No", file9_SD_No, hslInteger);
      file9.AddField("WTC_No", file9_WTC_No, hslInteger);
      file9.AddField("IC_No", file9_IC_No, hslInteger);
      file9.AddField("Remaining_PCR", PCR_Remain_PRODUCT_003_1st_Tube, hslInteger);
      file9.AddField("PCR_Cartridge_Count", file9_PCR_Remain, hslInteger);
      if( 0 == file9.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 3;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file9.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file9.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file9.RemoveFields();
      file9_Set_No = 1;
      if (file9_Product_No == "PRODUCT_ANY_001")
      {
        file9_Set_No = 2;
      }
      if (file9_Product_No == "PRODUCT_ANY_006")
      {
        file9_Set_No = 2;
      }
      if (file9_Product_No == "PRODUCT_ALL_029")
      {
        file9_Set_No = 2;
      }
      if (file9_Product_No == "PRODUCT_ALL_030")
      {
        file9_Set_No = 2;
      }
      if (file9_Product_No == "PRODUCT_ALL_031")
      {
        file9_Set_No = 3;
      }
      PCR_Remain_PRODUCT_003 = file9_PCR_Remain;
      file9_PPC_No = 0;
      file9_PPC_No = (file9_WTC_No + file9_SD_No + file9_PC_No);
      Trace ("Product = ", file9_Product_No);
      Trace ("Product Name = ", file9_Product_Name);
      Trace ("NC_No = ", file9_NC_No);
      Trace ("WTC_No = ", file9_WTC_No);
      Trace ("SD_No = ", file9_SD_No);
      Trace ("PC_No = ", file9_PC_No);
      Trace ("PPC_No = ", file9_PPC_No);
      Trace ("Set_No = ", file9_Set_No);
      Trace ("PCR_Remain_PRODUCT_003 = ", PCR_Remain_PRODUCT_003);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_004 != 0)
    {
      file11.AddField("Step", file11_Step, hslString, 255);
      file11.AddField("Product_No", file11_Product_No, hslString, 255);
      file11.AddField("Rack", file11_Rack, hslString, 255);
      file11.AddField("Tube", file11_Tube, hslString, 255);
      file11.AddField("Plate", file11_Plate, hslString, 255);
      file11.AddField("Product_Name", file11_Product_Name, hslString, 255);
      file11.AddField("Extraction_Kit", file11_Extraction_Kit, hslInteger);
      file11.AddField("PC_No", file11_PC_No, hslInteger);
      file11.AddField("NC_No", file11_NC_No, hslInteger);
      file11.AddField("SD_No", file11_SD_No, hslInteger);
      file11.AddField("WTC_No", file11_WTC_No, hslInteger);
      file11.AddField("IC_No", file11_IC_No, hslInteger);
      file11.AddField("Remaining_PCR", PCR_Remain_PRODUCT_004_1st_Tube, hslInteger);
      file11.AddField("PCR_Cartridge_Count", file11_PCR_Remain, hslInteger);
      if( 0 == file11.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 4;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file11.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file11.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file11.RemoveFields();
      file11_Set_No = 1;
      if (file11_Product_No == "PRODUCT_ANY_001")
      {
        file11_Set_No = 2;
      }
      if (file11_Product_No == "PRODUCT_ANY_006")
      {
        file11_Set_No = 2;
      }
      if (file11_Product_No == "PRODUCT_ALL_029")
      {
        file11_Set_No = 2;
      }
      if (file11_Product_No == "PRODUCT_ALL_030")
      {
        file11_Set_No = 2;
      }
      if (file11_Product_No == "PRODUCT_ALL_031")
      {
        file11_Set_No = 3;
      }
      PCR_Remain_PRODUCT_004 = file11_PCR_Remain;
      file11_PPC_No = 0;
      file11_PPC_No = (file11_WTC_No + file11_SD_No + file11_PC_No);
      Trace ("Product = ", file11_Product_No);
      Trace ("Product Name = ", file11_Product_Name);
      Trace ("NC_No = ", file11_NC_No);
      Trace ("WTC_No = ", file11_WTC_No);
      Trace ("SD_No = ", file11_SD_No);
      Trace ("PC_No = ", file11_PC_No);
      Trace ("PPC_No = ", file11_PPC_No);
      Trace ("Set_No = ", file11_Set_No);
      Trace ("PCR_Remain_PRODUCT_004 = ", PCR_Remain_PRODUCT_004);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_005 != 0)
    {
      file13.AddField("Step", file13_Step, hslString, 255);
      file13.AddField("Product_No", file13_Product_No, hslString, 255);
      file13.AddField("Product_Name", file13_Product_Name, hslString, 255);
      file13.AddField("Extraction_Kit", file13_Extraction_Kit, hslInteger);
      file13.AddField("PC_No", file13_PC_No, hslInteger);
      file13.AddField("NC_No", file13_NC_No, hslInteger);
      file13.AddField("SD_No", file13_SD_No, hslInteger);
      file13.AddField("WTC_No", file13_WTC_No, hslInteger);
      file13.AddField("IC_No", file13_IC_No, hslInteger);
      file13.AddField("Remaining_PCR", PCR_Remain_PRODUCT_005_1st_Tube, hslInteger);
      file13.AddField("PCR_Cartridge_Count", file13_PCR_Remain, hslInteger);
      if( 0 == file13.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 5;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file13.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file13.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file13.RemoveFields();
      file13_Set_No = 1;
      if (file13_Product_No == "PRODUCT_ANY_001")
      {
        file13_Set_No = 2;
      }
      if (file13_Product_No == "PRODUCT_ANY_006")
      {
        file13_Set_No = 2;
      }
      if (file13_Product_No == "PRODUCT_ALL_029")
      {
        file13_Set_No = 2;
      }
      if (file13_Product_No == "PRODUCT_ALL_030")
      {
        file13_Set_No = 2;
      }
      if (file13_Product_No == "PRODUCT_ALL_031")
      {
        file13_Set_No = 3;
      }
      PCR_Remain_PRODUCT_005 = file13_PCR_Remain;
      Trace ("Product = ", file13_Product_No);
      Trace ("Product Name = ", file13_Product_Name);
      Trace ("NC_No = ", file13_NC_No);
      Trace ("WTC_No = ", file13_WTC_No);
      Trace ("SD_No = ", file13_SD_No);
      Trace ("PC_No = ", file13_PC_No);
      Trace ("Set_No = ", file13_Set_No);
      Trace ("PCR_Remain_PRODUCT_005 = ", PCR_Remain_PRODUCT_005);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_006 != 0)
    {
      file15.AddField("Step", file15_Step, hslString, 255);
      file15.AddField("Product_No", file15_Product_No, hslString, 255);
      file15.AddField("Product_Name", file15_Product_Name, hslString, 255);
      file15.AddField("Extraction_Kit", file15_Extraction_Kit, hslInteger);
      file15.AddField("PC_No", file15_PC_No, hslInteger);
      file15.AddField("NC_No", file15_NC_No, hslInteger);
      file15.AddField("SD_No", file15_SD_No, hslInteger);
      file15.AddField("WTC_No", file15_WTC_No, hslInteger);
      file15.AddField("IC_No", file15_IC_No, hslInteger);
      file15.AddField("Remaining_PCR", PCR_Remain_PRODUCT_006_1st_Tube, hslInteger);
      file15.AddField("PCR_Cartridge_Count", file15_PCR_Remain, hslInteger);
      if( 0 == file15.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 6;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file15.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file15.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file15.RemoveFields();
      file15_Set_No = 1;
      if (file15_Product_No == "PRODUCT_ANY_001")
      {
        file15_Set_No = 2;
      }
      if (file15_Product_No == "PRODUCT_ANY_006")
      {
        file15_Set_No = 2;
      }
      if (file15_Product_No == "PRODUCT_ALL_029")
      {
        file15_Set_No = 2;
      }
      if (file15_Product_No == "PRODUCT_ALL_030")
      {
        file15_Set_No = 2;
      }
      if (file15_Product_No == "PRODUCT_ALL_031")
      {
        file15_Set_No = 3;
      }
      PCR_Remain_PRODUCT_006 = file15_PCR_Remain;
      Trace ("Product = ", file15_Product_No);
      Trace ("Product Name = ", file15_Product_Name);
      Trace ("NC_No = ", file15_NC_No);
      Trace ("WTC_No = ", file15_WTC_No);
      Trace ("SD_No = ", file15_SD_No);
      Trace ("PC_No = ", file15_PC_No);
      Trace ("Set_No = ", file15_Set_No);
      Trace ("PCR_Remain_PRODUCT_006 = ", PCR_Remain_PRODUCT_006);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_007 != 0)
    {
      file17.AddField("Step", file17_Step, hslString, 255);
      file17.AddField("Product_No", file17_Product_No, hslString, 255);
      file17.AddField("Product_Name", file17_Product_Name, hslString, 255);
      file17.AddField("Extraction_Kit", file17_Extraction_Kit, hslInteger);
      file17.AddField("PC_No", file17_PC_No, hslInteger);
      file17.AddField("NC_No", file17_NC_No, hslInteger);
      file17.AddField("SD_No", file17_SD_No, hslInteger);
      file17.AddField("WTC_No", file17_WTC_No, hslInteger);
      file17.AddField("IC_No", file17_IC_No, hslInteger);
      file17.AddField("Remaining_PCR", PCR_Remain_PRODUCT_007_1st_Tube, hslInteger);
      file17.AddField("PCR_Cartridge_Count", file17_PCR_Remain, hslInteger);
      if( 0 == file17.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 7;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file17.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file17.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file17.RemoveFields();
      file17_Set_No = 1;
      if (file17_Product_No == "PRODUCT_ANY_001")
      {
        file17_Set_No = 2;
      }
      if (file17_Product_No == "PRODUCT_ANY_006")
      {
        file17_Set_No = 2;
      }
      if (file17_Product_No == "PRODUCT_ALL_029")
      {
        file17_Set_No = 2;
      }
      if (file17_Product_No == "PRODUCT_ALL_030")
      {
        file17_Set_No = 2;
      }
      if (file17_Product_No == "PRODUCT_ALL_031")
      {
        file17_Set_No = 3;
      }
      PCR_Remain_PRODUCT_007 = file17_PCR_Remain;
      Trace ("Product = ", file17_Product_No);
      Trace ("Product Name = ", file17_Product_Name);
      Trace ("NC_No = ", file17_NC_No);
      Trace ("WTC_No = ", file17_WTC_No);
      Trace ("SD_No = ", file17_SD_No);
      Trace ("PC_No = ", file17_PC_No);
      Trace ("Set_No = ", file17_Set_No);
      Trace ("PCR_Remain_PRODUCT_007 = ", PCR_Remain_PRODUCT_007);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_008 != 0)
    {
      file19.AddField("Step", file19_Step, hslString, 255);
      file19.AddField("Product_No", file19_Product_No, hslString, 255);
      file19.AddField("Product_Name", file19_Product_Name, hslString, 255);
      file19.AddField("Extraction_Kit", file19_Extraction_Kit, hslInteger);
      file19.AddField("PC_No", file19_PC_No, hslInteger);
      file19.AddField("NC_No", file19_NC_No, hslInteger);
      file19.AddField("SD_No", file19_SD_No, hslInteger);
      file19.AddField("WTC_No", file19_WTC_No, hslInteger);
      file19.AddField("IC_No", file19_IC_No, hslInteger);
      file19.AddField("Remaining_PCR", PCR_Remain_PRODUCT_008_1st_Tube, hslInteger);
      file19.AddField("PCR_Cartridge_Count", file19_PCR_Remain, hslInteger);
      if( 0 == file19.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 8;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file19.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file19.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file19.RemoveFields();
      file19_Set_No = 1;
      if (file19_Product_No == "PRODUCT_ANY_001")
      {
        file19_Set_No = 2;
      }
      if (file19_Product_No == "PRODUCT_ANY_006")
      {
        file19_Set_No = 2;
      }
      if (file19_Product_No == "PRODUCT_ALL_029")
      {
        file19_Set_No = 2;
      }
      if (file19_Product_No == "PRODUCT_ALL_030")
      {
        file19_Set_No = 2;
      }
      if (file19_Product_No == "PRODUCT_ALL_031")
      {
        file19_Set_No = 3;
      }
      PCR_Remain_PRODUCT_008 = file19_PCR_Remain;
      Trace ("Product = ", file19_Product_No);
      Trace ("Product Name = ", file19_Product_Name);
      Trace ("NC_No = ", file19_NC_No);
      Trace ("WTC_No = ", file19_WTC_No);
      Trace ("SD_No = ", file19_SD_No);
      Trace ("PC_No = ", file19_PC_No);
      Trace ("Set_No = ", file19_Set_No);
      Trace ("PCR_Remain_PRODUCT_008 = ", PCR_Remain_PRODUCT_008);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_009 != 0)
    {
      file21.AddField("Step", file21_Step, hslString, 255);
      file21.AddField("Product_No", file21_Product_No, hslString, 255);
      file21.AddField("Product_Name", file21_Product_Name, hslString, 255);
      file21.AddField("Extraction_Kit", file21_Extraction_Kit, hslInteger);
      file21.AddField("PC_No", file21_PC_No, hslInteger);
      file21.AddField("NC_No", file21_NC_No, hslInteger);
      file21.AddField("SD_No", file21_SD_No, hslInteger);
      file21.AddField("WTC_No", file21_WTC_No, hslInteger);
      file21.AddField("IC_No", file21_IC_No, hslInteger);
      file21.AddField("Remaining_PCR", PCR_Remain_PRODUCT_009_1st_Tube, hslInteger);
      file21.AddField("PCR_Cartridge_Count", file21_PCR_Remain, hslInteger);
      if( 0 == file21.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 9;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file21.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file21.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file21.RemoveFields();
      file21_Set_No = 1;
      if (file21_Product_No == "PRODUCT_ANY_001")
      {
        file21_Set_No = 2;
      }
      if (file21_Product_No == "PRODUCT_ANY_006")
      {
        file21_Set_No = 2;
      }
      if (file21_Product_No == "PRODUCT_ALL_029")
      {
        file21_Set_No = 2;
      }
      if (file21_Product_No == "PRODUCT_ALL_030")
      {
        file21_Set_No = 2;
      }
      if (file21_Product_No == "PRODUCT_ALL_031")
      {
        file21_Set_No = 3;
      }
      PCR_Remain_PRODUCT_009 = file21_PCR_Remain;
      Trace ("Product = ", file21_Product_No);
      Trace ("Product Name = ", file21_Product_Name);
      Trace ("NC_No = ", file21_NC_No);
      Trace ("WTC_No = ", file21_WTC_No);
      Trace ("SD_No = ", file21_SD_No);
      Trace ("PC_No = ", file21_PC_No);
      Trace ("Set_No = ", file21_Set_No);
      Trace ("PCR_Remain_PRODUCT_009 = ", PCR_Remain_PRODUCT_009);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_010 != 0)
    {
      file23.AddField("Step", file23_Step, hslString, 255);
      file23.AddField("Product_No", file23_Product_No, hslString, 255);
      file23.AddField("Product_Name", file23_Product_Name, hslString, 255);
      file23.AddField("Extraction_Kit", file23_Extraction_Kit, hslInteger);
      file23.AddField("PC_No", file23_PC_No, hslInteger);
      file23.AddField("NC_No", file23_NC_No, hslInteger);
      file23.AddField("SD_No", file23_SD_No, hslInteger);
      file23.AddField("WTC_No", file23_WTC_No, hslInteger);
      file23.AddField("IC_No", file23_IC_No, hslInteger);
      file23.AddField("Remaining_PCR", PCR_Remain_PRODUCT_010_1st_Tube, hslInteger);
      file23.AddField("PCR_Cartridge_Count", file23_PCR_Remain, hslInteger);
      if( 0 == file23.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 10;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file23.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file23.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file23.RemoveFields();
      file23_Set_No = 1;
      if (file23_Product_No == "PRODUCT_ANY_001")
      {
        file23_Set_No = 2;
      }
      if (file23_Product_No == "PRODUCT_ANY_006")
      {
        file23_Set_No = 2;
      }
      if (file23_Product_No == "PRODUCT_ALL_029")
      {
        file23_Set_No = 2;
      }
      if (file23_Product_No == "PRODUCT_ALL_030")
      {
        file23_Set_No = 2;
      }
      if (file23_Product_No == "PRODUCT_ALL_031")
      {
        file23_Set_No = 3;
      }
      PCR_Remain_PRODUCT_010 = file23_PCR_Remain;
      Trace ("Product = ", file23_Product_No);
      Trace ("Product Name = ", file23_Product_Name);
      Trace ("NC_No = ", file23_NC_No);
      Trace ("WTC_No = ", file23_WTC_No);
      Trace ("SD_No = ", file23_SD_No);
      Trace ("PC_No = ", file23_PC_No);
      Trace ("Set_No = ", file23_Set_No);
      Trace ("PCR_Remain_PRODUCT_010 = ", PCR_Remain_PRODUCT_010);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_011 != 0)
    {
      file25.AddField("Step", file25_Step, hslString, 255);
      file25.AddField("Product_No", file25_Product_No, hslString, 255);
      file25.AddField("Product_Name", file25_Product_Name, hslString, 255);
      file25.AddField("Extraction_Kit", file25_Extraction_Kit, hslInteger);
      file25.AddField("PC_No", file25_PC_No, hslInteger);
      file25.AddField("NC_No", file25_NC_No, hslInteger);
      file25.AddField("SD_No", file25_SD_No, hslInteger);
      file25.AddField("WTC_No", file25_WTC_No, hslInteger);
      file25.AddField("IC_No", file25_IC_No, hslInteger);
      file25.AddField("Remaining_PCR", PCR_Remain_PRODUCT_011_1st_Tube, hslInteger);
      file25.AddField("PCR_Cartridge_Count", file25_PCR_Remain, hslInteger);
      if( 0 == file25.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 11;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file25.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file25.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file25.RemoveFields();
      file25_Set_No = 1;
      if (file25_Product_No == "PRODUCT_ANY_001")
      {
        file25_Set_No = 2;
      }
      if (file25_Product_No == "PRODUCT_ANY_006")
      {
        file25_Set_No = 2;
      }
      if (file25_Product_No == "PRODUCT_ALL_029")
      {
        file25_Set_No = 2;
      }
      if (file25_Product_No == "PRODUCT_ALL_030")
      {
        file25_Set_No = 2;
      }
      if (file25_Product_No == "PRODUCT_ALL_031")
      {
        file25_Set_No = 3;
      }
      PCR_Remain_PRODUCT_011 = file25_PCR_Remain;
      Trace ("Product = ", file25_Product_No);
      Trace ("Product Name = ", file25_Product_Name);
      Trace ("NC_No = ", file25_NC_No);
      Trace ("WTC_No = ", file25_WTC_No);
      Trace ("SD_No = ", file25_SD_No);
      Trace ("PC_No = ", file25_PC_No);
      Trace ("Set_No = ", file25_Set_No);
      Trace ("PCR_Remain_PRODUCT_011 = ", PCR_Remain_PRODUCT_011);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_012 != 0)
    {
      file27.AddField("Step", file27_Step, hslString, 255);
      file27.AddField("Product_No", file27_Product_No, hslString, 255);
      file27.AddField("Product_Name", file27_Product_Name, hslString, 255);
      file27.AddField("Extraction_Kit", file27_Extraction_Kit, hslInteger);
      file27.AddField("PC_No", file27_PC_No, hslInteger);
      file27.AddField("NC_No", file27_NC_No, hslInteger);
      file27.AddField("SD_No", file27_SD_No, hslInteger);
      file27.AddField("WTC_No", file27_WTC_No, hslInteger);
      file27.AddField("IC_No", file27_IC_No, hslInteger);
      file27.AddField("Remaining_PCR", PCR_Remain_PRODUCT_012_1st_Tube, hslInteger);
      file27.AddField("PCR_Cartridge_Count", file27_PCR_Remain, hslInteger);
      if( 0 == file27.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 12;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file27.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file27.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file27.RemoveFields();
      file27_Set_No = 1;
      if (file27_Product_No == "PRODUCT_ANY_001")
      {
        file27_Set_No = 2;
      }
      if (file27_Product_No == "PRODUCT_ANY_006")
      {
        file27_Set_No = 2;
      }
      if (file27_Product_No == "PRODUCT_ALL_029")
      {
        file27_Set_No = 2;
      }
      if (file27_Product_No == "PRODUCT_ALL_030")
      {
        file27_Set_No = 2;
      }
      if (file27_Product_No == "PRODUCT_ALL_031")
      {
        file27_Set_No = 3;
      }
      PCR_Remain_PRODUCT_012 = file27_PCR_Remain;
      Trace ("Product = ", file27_Product_No);
      Trace ("Product Name = ", file27_Product_Name);
      Trace ("NC_No = ", file27_NC_No);
      Trace ("WTC_No = ", file27_WTC_No);
      Trace ("SD_No = ", file27_SD_No);
      Trace ("PC_No = ", file27_PC_No);
      Trace ("Set_No = ", file27_Set_No);
      Trace ("PCR_Remain_PRODUCT_012 = ", PCR_Remain_PRODUCT_012);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    Trace ("STARMag_Remain = ",STARMag_Remain);
    Trace ("Total Sample Qty. = ", Sample_Cnt);
       if (Sample_Cnt_PRODUCT_001 > 0)
       {
         Trace (file2_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_001);
       }
       if (Sample_Cnt_PRODUCT_002 > 0)
       {
         Trace (file7_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_002);
       }
       if (Sample_Cnt_PRODUCT_003 > 0)
       {
         Trace (file9_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_003);
       }
       if (Sample_Cnt_PRODUCT_004 > 0)
       {
         Trace (file11_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_004);
       }
       if (Sample_Cnt_PRODUCT_005 > 0)
       {
         Trace (file13_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_005);
       }
       if (Sample_Cnt_PRODUCT_006 > 0)
       {
         Trace (file15_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_006);
       }
       if (Sample_Cnt_PRODUCT_007 > 0)
       {
         Trace (file17_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_007);
       }
       if (Sample_Cnt_PRODUCT_008 > 0)
       {
         Trace (file19_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_008);
       }
       if (Sample_Cnt_PRODUCT_009 > 0)
       {
         Trace (file21_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_009);
       }
       if (Sample_Cnt_PRODUCT_010 > 0)
       {
         Trace (file23_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_010);
       }
       if (Sample_Cnt_PRODUCT_011 > 0)
       {
         Trace (file25_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_011);
       }
       if (Sample_Cnt_PRODUCT_012 > 0)
       {
         Trace (file27_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_012);
       }
    MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    Strip_Cnt_PRODUCT_001 = 0;
    Strip_Cnt_PRODUCT_002 = 0;
    Strip_Cnt_PRODUCT_003 = 0;
    Strip_Cnt_PRODUCT_004 = 0;
    Strip_Cnt_PRODUCT_Total = 0;
    Strip_Cnt_PRODUCT_001 = (Sample_Cnt_PRODUCT_001 + file2_PC_No + file2_NC_No + file2_WTC_No + file2_SD_No);
    Strip_Cnt_PRODUCT_002 = (Sample_Cnt_PRODUCT_002 + file7_PC_No + file7_NC_No + file7_WTC_No + file7_SD_No);
    Strip_Cnt_PRODUCT_003 = (Sample_Cnt_PRODUCT_003 + file9_PC_No + file9_NC_No + file9_WTC_No + file9_SD_No);
    Strip_Cnt_PRODUCT_004 = (Sample_Cnt_PRODUCT_004 + file11_PC_No + file11_NC_No + file11_WTC_No + file11_SD_No);
    Strip_Cnt_PRODUCT_001 = Strip_Cnt_PRODUCT_001 / (8 * 1.0);
    Strip_Cnt_PRODUCT_002 = Strip_Cnt_PRODUCT_002 / (8 * 1.0);
    Strip_Cnt_PRODUCT_003 = Strip_Cnt_PRODUCT_003 / (8 * 1.0);
    Strip_Cnt_PRODUCT_004 = Strip_Cnt_PRODUCT_004 / (8 * 1.0);
    Strip_Cnt_PRODUCT_001 = MthCeiling(Strip_Cnt_PRODUCT_001);
    Strip_Cnt_PRODUCT_002 = MthCeiling(Strip_Cnt_PRODUCT_002);
    Strip_Cnt_PRODUCT_003 = MthCeiling(Strip_Cnt_PRODUCT_003);
    Strip_Cnt_PRODUCT_004 = MthCeiling(Strip_Cnt_PRODUCT_004);
    Strip_Cnt_PRODUCT_Total = Strip_Cnt_PRODUCT_001 + Strip_Cnt_PRODUCT_002 + Strip_Cnt_PRODUCT_003 + Strip_Cnt_PRODUCT_004;
    Trace ("Strip_Cnt_PRODUCT_001 = ", Strip_Cnt_PRODUCT_001);
    Trace ("Strip_Cnt_PRODUCT_002 = ", Strip_Cnt_PRODUCT_002);
    Trace ("Strip_Cnt_PRODUCT_003 = ", Strip_Cnt_PRODUCT_003);
    Trace ("Strip_Cnt_PRODUCT_004 = ", Strip_Cnt_PRODUCT_004);
    Trace ("Strip_Cnt_PRODUCT_Total = ", Strip_Cnt_PRODUCT_Total);
    MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    First_Position_PRODUCT_001 = 0;
    First_Position_PRODUCT_002 = 0;
    First_Position_PRODUCT_003 = 0;
    First_Position_PRODUCT_004 = 0;
    First_Position_PRODUCT_001 = 1;
    First_Position_PRODUCT_002 = Strip_Cnt_PRODUCT_001 * 8 + 1;
    First_Position_PRODUCT_003 = (Strip_Cnt_PRODUCT_001 + Strip_Cnt_PRODUCT_002) * 8 + 1;
    First_Position_PRODUCT_004 = (Strip_Cnt_PRODUCT_001 + Strip_Cnt_PRODUCT_002 + Strip_Cnt_PRODUCT_003) * 8 + 1;
    if (file1_User == 1)
    {
      dialogHandle_1.SetInputSize(2);
      dialogHandle_1.SetInputField(0, Translate("How Many Samples?"), hslInteger, 1, 1, 96);
      dialogHandle_1.SetInputField(1, Translate("How Many Samples Can be Extracted using the first Cartridge?"), hslInteger, 96, 1, 96);
      dialogHandle_1.ShowInput(Translate("Method Setup"), hslInfinite, hslOKOnly | hslDefButton1);
      Sample_Cnt = dialogHandle_1.GetInputField(0);
      STARMag_Remain = dialogHandle_1.GetInputField(1);
      Sample_Cnt_Ini = Sample_Cnt;
    }
    EXTRACTION_NIMBUS_V6::Set_ChannelPattern(Sample_Cnt, ChPattern_Chk, ChPattern_Remain, ChPattern_Remain2);
    Set_Seq_Extraction();
    if (Sample_Cnt > STARMag_Remain)
    {
      Set_Seq_Two_Cartridge();
    }
    if (file2_Step != "STEP_001")
    {
      Set_Seq_PCRsetup();
    }
    file4.AddField("SubMethod", file4_SubMethod, hslString, 255);
    file4.AddField("Step_Name", file4_Step_Name, hslString, 255);
    if( 0 == file4.Open("C:\\Seegene_Method_Setting\\NIMBUS Reconstructed Method List.xls" + " " + "'Reconstructed Method$'", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS Reconstructed Method List.xls", "HxMetEdCompCmd");
    }
    StepChk_WB1_Flag = 0;
    StepChk_WB2_Flag = 0;
    StepChk_Ctrdg_Flag = 0;
    StepChk_PK_Flag = 0;
    StepChk_Bead_Flag = 0;
    StepChk_IC_Flag = 0;
    StepChk_Chk = 0;
    {
      loopCounter45 = 0;
      while (
         (file4.Eof() == 0)
      )
      {
        loopCounter45 = loopCounter45 + 1;
        if( 0 == file4.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        SubMethod_right = StrRight(file4_SubMethod, 6);
        if (file4_Step_Name == "Wash_1_Buffer_Dispense")
        {
          StepChk_WB1_Flag = 1;
        }
        if (file4_Step_Name == "Wash_2_Buffer_Dispense")
        {
          StepChk_WB2_Flag = 1;
        }
        if (file4_SubMethod != "WasteBuffer")
        {
          if (SubMethod_right == "Buffer")
          {
            StepChk_Ctrdg_Flag = 1;
            StepChk_Chk = 1;
          }
        }
        if (file4_SubMethod == "Disp_PKmix")
        {
          StepChk_PK_Flag = 1;
          StepChk_Chk = 1;
        }
        if (file4_SubMethod == "Disp_Bead")
        {
          StepChk_Bead_Flag = 1;
          StepChk_Chk = 1;
        }
        if (file4_SubMethod == "Disp_IC")
        {
          StepChk_IC_Flag = 1;
          StepChk_Chk = 1;
        }
      }
    }
    if( 0 != file4.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file4.RemoveFields();
    file4.AddField("Step_Name", file4_Step_Name, hslString, 255);
    file4.AddField("Enable", file4_Enable, hslString, 255);
    file4.AddField("No", file4_No, hslInteger);
    file4.AddField("SubMethod", file4_SubMethod, hslString, 255);
    file4.AddField("Liquid_Class", file4_Liquid_Class, hslString, 255);
    file4.AddField("Liquid_Class_2", file4_Liquid_Class_2, hslString, 255);
    file4.AddField("Volume", file4_Volume, hslFloat);
    file4.AddField("Tip_Sequence", file4_Tip_Sequence, hslInteger);
    file4.AddField("Asp_position", file4_Asp_position, hslInteger);
    file4.AddField("Asp_position_2nd", file4_Asp_position_2nd, hslInteger);
    file4.AddField("Asp_Base1", file4_Asp_Base1, hslInteger);
    file4.AddField("Asp_Base4", file4_Asp_Base4, hslInteger);
    file4.AddField("Asp_Base8", file4_Asp_Base8, hslInteger);
    file4.AddField("Asp_cLLD_On", file4_Asp_cLLD_On, hslInteger);
    file4.AddField("Asp_Submerge_Depth", file4_Asp_Submerge_Depth, hslFloat);
    file4.AddField("Asp_Bottom_Height", file4_Asp_Bottom_Height, hslFloat);
    file4.AddField("Asp_Retract_Distance", file4_Asp_Retract_Distance, hslFloat);
    file4.AddField("Asp_Premix_Vol", file4_Asp_Premix_Vol, hslFloat);
    file4.AddField("Asp_Premix_Cycle", file4_Asp_Premix_Cycle, hslFloat);
    file4.AddField("Asp_Premix_ASD", file4_Asp_Premix_ASD, hslFloat);
    file4.AddField("Asp_ADC_On", file4_Asp_ADC_On, hslInteger);
    file4.AddField("PreAliq_Volume", file4_PreAliq_Volume, hslFloat);
    file4.AddField("PreAliq_Disp_cLLD_On", file4_PreAliq_Disp_cLLD_On, hslFloat);
    file4.AddField("PreAliq_Disp_Submerge_Depth", file4_PreAliq_Disp_Submerge_Depth, hslFloat);
    file4.AddField("PreAliq_Disp_Bottom_Height", file4_PreAliq_Disp_Bottom_Height, hslFloat);
    file4.AddField("PreAliq_Retract_Distance", file4_PreAliq_Retract_Distance, hslFloat);
    file4.AddField("Disp_position", file4_Disp_position, hslInteger);
    file4.AddField("Disp_Base1", file4_Disp_Base1, hslInteger);
    file4.AddField("Disp_Base4", file4_Disp_Base4, hslInteger);
    file4.AddField("Disp_Base8", file4_Disp_Base8, hslInteger);
    file4.AddField("Disp_cLLD_On", file4_Disp_cLLD_On, hslInteger);
    file4.AddField("Disp_Submerge_Depth", file4_Disp_Submerge_Depth, hslFloat);
    file4.AddField("Disp_Bottom_Height", file4_Disp_Bottom_Height, hslFloat);
    file4.AddField("Disp_Retract_Distance", file4_Disp_Retract_Distance, hslFloat);
    file4.AddField("Disp_Postmix_Vol", file4_Disp_Postmix_Vol, hslFloat);
    file4.AddField("Disp_Postmix_Cycle", file4_Disp_Postmix_Cycle, hslFloat);
    file4.AddField("Disp_Postmix_ASD", file4_Disp_Postmix_ASD, hslFloat);
    file4.AddField("Incu_Time", file4_Incu_Time, hslFloat);
    file4.AddField("Incu_Speed", file4_Incu_Speed, hslInteger);
    file4.AddField("Incu_Temp", file4_Incu_Temp, hslFloat);
    file4.AddField("Start_Location", file4_Start_Location, hslInteger);
    file4.AddField("Target_Location", file4_Target_Location, hslInteger);
    file4.AddField("Check_DWP", file4_Check_DWP, hslInteger);
    file4.AddField("Seq_Shaker_0", file4_Seq_Shaker_0, hslInteger);
    file4.AddField("Seq_Shaker_1", file4_Seq_Shaker_1, hslInteger);
    file4.AddField("Seq_Shaker_2", file4_Seq_Shaker_2, hslInteger);
    file4.AddField("Seq_Shaker_1_Bead", file4_Seq_Shaker_1_Bead, hslInteger);
    file4.AddField("Seq_Magnet_0", file4_Seq_Magnet_0, hslInteger);
    file4.AddField("Seq_Magnet_1", file4_Seq_Magnet_1, hslInteger);
    file4.AddField("Seq_Magnet_2", file4_Seq_Magnet_2, hslInteger);
    file4.AddField("Reuse_Tip", file4_Reuse_Tip, hslInteger);
    if( 0 == file4.Open("C:\\Seegene_Method_Setting\\NIMBUS Reconstructed Method List.xls" + " " + "'Reconstructed Method$'", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS Reconstructed Method List.xls", "HxMetEdCompCmd");
    }
    {
      loopCounter2 = 0;
      while (
         (file4.Eof() == 0)
      )
      {
        loopCounter2 = loopCounter2 + 1;
        if( 0 == file4.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Step_Name = file4_Enable;
        if (loopCounter2 == 1)
        {
          if (file2_SW == 1)
          {
            file8.AddField("Deck_Site", file8_Deck_Site, hslInteger);
            file8.AddField("Deviation", file8_Deviation, hslFloat);
            if( 0 == file8.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "Zvariation$", hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
            }
            if( 0 == file8.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == file8.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 != file8.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            file8.RemoveFields();
            file10.AddField("PCR_Adaptor", file10_PCR_Adaptor, hslInteger);
            if( 0 == file10.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "'PCR Adaptor$'", hslAppend) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
            }
            if( 0 == file10.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 != file10.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            file10.RemoveFields();
          }
          else
          {
            file8_Deck_Site = 2;
            file8_Deviation = 0;
            file10.AddField("PCR_Adaptor", file10_PCR_Adaptor, hslInteger);
            if( 0 == file10.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "'PCR Adaptor$'", hslAppend) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
            }
            if( 0 == file10.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 != file10.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            file10.RemoveFields();
          }
          if (file10_PCR_Adaptor == 0)
          {
            Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
            Trace ("Deck Site = Position #", file8_Deck_Site);
            Trace ("Deviation = ", file8_Deviation);
            Trace ("Revision number of PCR Adaptor = Not selected");
            Trace ("PCR Adaptor = ", file10_PCR_Adaptor);
            Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
            abort;
          }
          else
          {
            if (file10_PCR_Adaptor == 1)
            {
              Adapter_PCR_HtChk = 1;
              Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
              Trace ("Deck Site = Position #", file8_Deck_Site);
              Trace ("Deviation = ", file8_Deviation);
              Trace ("Revision number of PCR Adaptor = Rev. A or B");
              Trace ("PCR Adaptor = ", file10_PCR_Adaptor);
              Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
            }
            if (file10_PCR_Adaptor == 2)
            {
              Adapter_PCR_HtChk = 0;
              Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
              Trace ("Deck Site = Position #", file8_Deck_Site);
              Trace ("Deviation = ", file8_Deviation);
              Trace ("Revision number of PCR Adaptor = None");
              Trace ("PCR Adaptor = ", file10_PCR_Adaptor);
              Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
            }
          }
          Adapter_Criterion = 0.63;
          if (Adapter_PCR_HtChk < Adapter_Criterion)
          {
            Ht_Difference = file8_Deviation + 0.27;
          }
          else
          {
            Ht_Difference = file8_Deviation - 1.008;
          }
          if (file2_SW == 1)
          {
            file8.AddField("Deck_Site", file8_Deck_Site, hslInteger);
            file8.AddField("Deviation", file8_Deviation, hslFloat);
            if( 0 == file8.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "Zvariation$", hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
            }
            {
              for(File8_Loopcounter1 = 0; File8_Loopcounter1 < 4;)
              {
                File8_Loopcounter1 = File8_Loopcounter1 + 1;
                if( 0 == file8.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
              }
            }
            if( 0 != file8.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            file8.RemoveFields();
            HHS_Zvariation = file8_Deviation;
            Trace ("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
            Trace ("Deck Site = Position #", file8_Deck_Site);
            Trace ("Deviation = ", file8_Deviation);
            Trace ("HHS_Zvariation = ", HHS_Zvariation);
            file8.AddField("Deck_Site", file8_Deck_Site, hslInteger);
            file8.AddField("Deviation", file8_Deviation, hslFloat);
            if( 0 == file8.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "Zvariation$", hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
            }
            {
              for(File8_Loopcounter2 = 0; File8_Loopcounter2 < 5;)
              {
                File8_Loopcounter2 = File8_Loopcounter2 + 1;
                if( 0 == file8.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
              }
            }
            if( 0 != file8.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            file8.RemoveFields();
            Magnet_Zvariation = file8_Deviation;
            Trace ("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
            Trace ("Deck Site = Position #", file8_Deck_Site);
            Trace ("Deviation = ", file8_Deviation);
            Trace ("Magnet_Zvariation = ", Magnet_Zvariation);
          }
          MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++\n+++++++++++++++ Initialize HHSs +++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++"));
          EXTRACTION_NIMBUS_V6::HHS_Initialize(file1_SimOn, HHS1);
          if (file2_Plate == "PLATE_012")
          {
            EXTRACTION_NIMBUS_V6::HHS_Initialize(file1_SimOn, HHS1);
            EXTRACTION_NIMBUS_V6::HHS_Initialize(file1_SimOn, HHS1);
          }
          if (file2_Plate == "PLATE_013")
          {
            EXTRACTION_NIMBUS_V6::HHS_Initialize(file1_SimOn, HHS1);
            EXTRACTION_NIMBUS_V6::HHS_Initialize(file1_SimOn, HHS1);
          }
          if (STEP >= 7)
          {
            EXTRACTION_NIMBUS_V6::HHS_Initialize(file1_SimOn, HHS1);
            EXTRACTION_NIMBUS_V6::HHS_Initialize(file1_SimOn, HHS1);
          }
          if (STEP <= 3)
          {
            if (STEP != 2)
            {
              if (file2_Extraction_Kit == 2)
              {
                MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++\n+++++++++++++++++ HHS Heater ++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++++++"));
                EXTRACTION_NIMBUS_V6::Start_Temp_HHS1(file1_SimOn, HHS1, 100);
              }
              if (file2_Extraction_Kit == 7)
              {
                MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++\n+++++++++++++++++ HHS Heater ++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++++++"));
                EXTRACTION_NIMBUS_V6::Start_Temp_HHS1(file1_SimOn, HHS1, 100);
              }
            }
          }
          MECC::TraceComment(Translate("******* Tip Counter Dialog and Check *******"));
          Use_All_Tips = 0;
          Use_300ul_Tips = 0;
          file3.AddField("Tip_Sequence", file3_Tip_Sequence, hslInteger);
          if( 0 == file3.Open("C:\\Seegene_Method_Setting\\NIMBUS Reconstructed Method List.xls" + " " + "'Reconstructed Method$'", hslRead) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS Reconstructed Method List.xls", "HxMetEdCompCmd");
          }
          if (file1_SimOn == 0)
          {
            if (STEP < 4)
            {
              if (STEP != 2)
              {
                if (StepChk_Chk != 0)
                {
                  Use_All_Tips = Use_All_Tips + 1;
                }
                if (StepChk_IC_Flag > 0)
                {
                  Use_IC1 = 0;
                  Use_IC2 = 0;
                  Use_IC3 = 0;
                  Use_IC4 = 0;
                  Use_IC5 = 0;
                  Use_IC6 = 0;
                  fileD.AddField("IC1", fileD_IC1, hslString, 255);
                  fileD.AddField("IC2", fileD_IC2, hslString, 255);
                  fileD.AddField("IC3", fileD_IC3, hslString, 255);
                  fileD.AddField("IC4", fileD_IC4, hslString, 255);
                  fileD.AddField("IC5", fileD_IC5, hslString, 255);
                  fileD.AddField("IC6", fileD_IC6, hslString, 255);
                  if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "WorkList2$", hslRead) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
                  }
                  {
                    while (
                       (fileD.Eof() == 0)
                    )
                    {
                      if( 0 == fileD.ReadRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      if (fileD_IC1 == "true")
                      {
                        Use_IC1 = 1;
                        if( 0 != fileD.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        fileD.RemoveFields();
                        break;
                      }
                    }
                  }
                  fileD.AddField("IC1", fileD_IC1, hslString, 255);
                  fileD.AddField("IC2", fileD_IC2, hslString, 255);
                  fileD.AddField("IC3", fileD_IC3, hslString, 255);
                  fileD.AddField("IC4", fileD_IC4, hslString, 255);
                  fileD.AddField("IC5", fileD_IC5, hslString, 255);
                  fileD.AddField("IC6", fileD_IC6, hslString, 255);
                  if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "WorkList2$", hslRead) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
                  }
                  {
                    while (
                       (fileD.Eof() == 0)
                    )
                    {
                      if( 0 == fileD.ReadRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      if (fileD_IC2 == "true")
                      {
                        Use_IC2 = 1;
                        if( 0 != fileD.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        fileD.RemoveFields();
                        break;
                      }
                    }
                  }
                  fileD.AddField("IC1", fileD_IC1, hslString, 255);
                  fileD.AddField("IC2", fileD_IC2, hslString, 255);
                  fileD.AddField("IC3", fileD_IC3, hslString, 255);
                  fileD.AddField("IC4", fileD_IC4, hslString, 255);
                  fileD.AddField("IC5", fileD_IC5, hslString, 255);
                  fileD.AddField("IC6", fileD_IC6, hslString, 255);
                  if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "WorkList2$", hslRead) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
                  }
                  {
                    while (
                       (fileD.Eof() == 0)
                    )
                    {
                      if( 0 == fileD.ReadRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      if (fileD_IC3 == "true")
                      {
                        Use_IC3 = 1;
                        if( 0 != fileD.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        fileD.RemoveFields();
                        break;
                      }
                    }
                  }
                  fileD.AddField("IC1", fileD_IC1, hslString, 255);
                  fileD.AddField("IC2", fileD_IC2, hslString, 255);
                  fileD.AddField("IC3", fileD_IC3, hslString, 255);
                  fileD.AddField("IC4", fileD_IC4, hslString, 255);
                  fileD.AddField("IC5", fileD_IC5, hslString, 255);
                  fileD.AddField("IC6", fileD_IC6, hslString, 255);
                  if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "WorkList2$", hslRead) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
                  }
                  {
                    while (
                       (fileD.Eof() == 0)
                    )
                    {
                      if( 0 == fileD.ReadRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      if (fileD_IC4 == "true")
                      {
                        Use_IC4 = 1;
                        if( 0 != fileD.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        fileD.RemoveFields();
                        break;
                      }
                    }
                  }
                  fileD.AddField("IC1", fileD_IC1, hslString, 255);
                  fileD.AddField("IC2", fileD_IC2, hslString, 255);
                  fileD.AddField("IC3", fileD_IC3, hslString, 255);
                  fileD.AddField("IC4", fileD_IC4, hslString, 255);
                  fileD.AddField("IC5", fileD_IC5, hslString, 255);
                  fileD.AddField("IC6", fileD_IC6, hslString, 255);
                  if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "WorkList2$", hslRead) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
                  }
                  {
                    while (
                       (fileD.Eof() == 0)
                    )
                    {
                      if( 0 == fileD.ReadRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      if (fileD_IC5 == "true")
                      {
                        Use_IC5 = 1;
                        if( 0 != fileD.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        fileD.RemoveFields();
                        break;
                      }
                    }
                  }
                  fileD.AddField("IC1", fileD_IC1, hslString, 255);
                  fileD.AddField("IC2", fileD_IC2, hslString, 255);
                  fileD.AddField("IC3", fileD_IC3, hslString, 255);
                  fileD.AddField("IC4", fileD_IC4, hslString, 255);
                  fileD.AddField("IC5", fileD_IC5, hslString, 255);
                  fileD.AddField("IC6", fileD_IC6, hslString, 255);
                  if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\NIMBUS.xls" + " " + "WorkList2$", hslRead) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\NIMBUS.xls", "HxMetEdCompCmd");
                  }
                  {
                    while (
                       (fileD.Eof() == 0)
                    )
                    {
                      if( 0 == fileD.ReadRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      if (fileD_IC6 == "true")
                      {
                        Use_IC6 = 1;
                        if( 0 != fileD.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        fileD.RemoveFields();
                        break;
                      }
                    }
                  }
                  if( 0 != fileD.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  fileD.RemoveFields();
                  ChPattern_Chk_IC = StrConcat4(Use_IC1, Use_IC2, Use_IC3, Use_IC4);
                  ChPattern_Chk_IC_2nd = StrConcat4(Use_IC5, Use_IC6, 0, 0);
                  if (Use_IC6 == 1)
                  {
                    Used_IC_No = 6;
                  }
                  else
                  {
                    if (Use_IC5 == 1)
                    {
                      Used_IC_No = 5;
                    }
                    else
                    {
                      if (Use_IC4 == 1)
                      {
                        Used_IC_No = 4;
                      }
                      else
                      {
                        if (Use_IC3 == 1)
                        {
                        Used_IC_No = 3;
                        }
                        else
                        {
                        if (Use_IC2 == 1)
                        {
                        Used_IC_No = 2;
                        }
                        else
                        {
                        if (Use_IC1 == 1)
                        {
                        Used_IC_No = 1;
                        }
                        else
                        {
                        Used_IC_No = 0;
                        }
                        }
                        }
                      }
                    }
                  }
                }
              }
            }
          }
          {
            loopCounter1 = 0;
            while (
               (file3.Eof() == 0)
            )
            {
              loopCounter1 = loopCounter1 + 1;
              if( 0 == file3.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if (file3_Tip_Sequence == 1)
              {
                Use_All_Tips = Use_All_Tips + 1;
              }
              if (file3_Tip_Sequence == 3)
              {
                Use_300ul_Tips = Use_300ul_Tips + 1;
              }
            }
          }
          if( 0 != file3.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          file3.RemoveFields();
          if (Use_All_Tips > 0)
          {
            TipCount1::Edit2(NimbusChannel.All_1000ul_Tips, Translate("All_Tips_Counter"), NimbusChannel, 999);
            TipsOnDeck_New = NimbusChannel.All_1000ul_Tips.GetCount();
            Trace ("TipsOnDeck_New = ", TipsOnDeck_New);
          }
          if (Use_300ul_Tips > 0)
          {
            TipCount1::Edit2(NimbusChannel.All_300ul_Tips, Translate("All_300ul_Tips_Counter"), NimbusChannel, 999);
            TipsOnDeck_300 = NimbusChannel.All_300ul_Tips.GetCount();
            Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
          }
          EXTRACTION_NIMBUS_V6::Check_Tips(NimbusChannel, NimbusChannel.All_1000ul_Tips, NimbusChannel.All_300ul_Tips, Sample_Cnt, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_All_Tips, Use_300ul_Tips, Random_Access, IC_Cnt_1st, IC_Cnt_2nd, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, STEP, file1_SimOn, StepChk_Ctrdg_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_PK_Flag, Used_IC_No, file2_Extraction_Kit, STARMag_Remain);
          if (STEP < 7)
          {
            Check_Grippers = 0;
            {
              loopCounter25 = 0;
              while (Check_Grippers == 0)
              {
                loopCounter25 = loopCounter25 + 1;
                onerror goto errLabel_145 ;
                err.Clear();
                {
                  	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
                }
                Check_Grippers = 1;
                errLabel_145 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  {
                    	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                  }
                  {
                    	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
                  }
                  {
                    	NimbusChannel._DED83B4B_588B_45A9_B86F_0F12C4EF600A("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"); // MoveAbsolute
                  }
                  dialogHandle_32.SetOutput(Translate("Core-Gripper(s) Not Correctly Mounted."), "\n", Translate("Please check Core_Grippers were equipped properly."), "\n", Translate("If you are ready to resume, please click [OK]."));
                  if( 0 == dialogHandle_32.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_32.ShowOutput(Translate("Core-Gripper(s) Not Correctly Mounted."), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_32.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  {
                    	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                  }
                  dialogHandle_13.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                  dialogHandle_13.ShowOutput(Translate("Core-Gripper(s) Not Correctly Mounted."), hslOKOnly | hslError | hslDefButton1, hslInfinite);
                  {
                    	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                  }
                }   /* end if from skip handler if no error */
              }
            }
            {
              	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
            }
            {
              	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
            }
          }
          if (STEP < 7)
          {
            if (STEP != 2)
            {
              if (file2_Product_No != "PRODUCT_EXT_016")
              {
                if (file2_Product_No != "PRODUCT_EXT_019")
                {
                  MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++\n+++++++++++++++  Verify DWP is in correct position +++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
                  if (file1_SimOn == 0)
                  {
                    Check_DWP = 0;
                    {
                      loopCounter25 = 0;
                      while (Check_DWP == 0)
                      {
                        loopCounter25 = loopCounter25 + 1;
                        {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._BFF2123F_358B_418A_BBA5_AE17E2DEDBED("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"); // LabwrDetectionCMD
                        	Return_PlateExist = arrRetValues[0];
                        	Return_PlateDetectHeight_Raw = arrRetValues[1];
                        }
                        {
                        	NimbusChannel._07F627B7_317A_4B22_8781_B67752A4A0BD("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"); // MoveRelative
                        }
                        MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++"));
                        Return_PlateDetectHeight = Return_PlateDetectHeight_Raw - Magnet_Zvariation;
                        Trace ("Height_Magnet = ", Return_PlateDetectHeight);
                        Trace ("Height_Magnet_Raw = ", Return_PlateDetectHeight_Raw);
                        MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++"));
                        Check_DWP = 1;
                        if (loopCounter25 == 2)
                        {
                        if (Return_PlateExist == 0)
                        {
                        dialogHandle_135.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_135.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_135.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_135.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight < 110)
                        {
                        dialogHandle_103.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_103.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_103.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_103.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight > 115.5)
                        {
                        dialogHandle_134.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_134.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_134.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_134.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        }
                        }
                        }
                        if (Return_PlateExist == 0)
                        {
                        {
                        	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
                        }
                        {
                        	NimbusChannel._DED83B4B_588B_45A9_B86F_0F12C4EF600A("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"); // MoveAbsolute
                        }
                        dialogHandle_70.SetOutput(Translate("The DWP is not on the Magnet."), "\n", Translate("Click OK to unlock the door and to place the plate in the correct position."));
                        if( 0 == dialogHandle_70.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_70.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_70.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_69.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_69.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight < 110)
                        {
                        {
                        	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
                        }
                        dialogHandle_78.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        if( 0 == dialogHandle_78.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_78.ShowOutput(Translate("96-DWP Not Correctly Mounted."), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_78.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_86.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_86.ShowOutput(Translate("96-DWP Not Correctly Mounted."), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight > 115.5)
                        {
                        {
                        	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
                        }
                        dialogHandle_66.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        if( 0 == dialogHandle_66.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_66.ShowOutput(Translate("96-DWP Not Correctly Mounted."), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_66.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_87.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_87.ShowOutput(Translate("96-DWP Not Correctly Mounted."), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        }
                        }
                      }
                    }
                  }
                  if (file2_Plate != "PLATE_012")
                  {
                    if (file2_Plate != "PLATE_013")
                    {
                      {
                        	NimbusChannel._AAAC4431_7BFF_414F_BEC0_638E8966FEB1("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"); // GetCORELabwrBySeq
                      }
                      {
                        	NimbusChannel._114615D6_29FF_496F_8045_904C6527C723("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"); // PutCoreLabwrBySeq
                      }
                      {
                        	NimbusChannel._07F627B7_317A_4B22_8781_B67752A4A0BD("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"); // MoveRelative
                      }
                      if (file1_SimOn == 0)
                      {
                        Check_DWP = 0;
                        {
                        loopCounter25 = 0;
                        while (Check_DWP == 0)
                        {
                        loopCounter25 = loopCounter25 + 1;
                        {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._BFF2123F_358B_418A_BBA5_AE17E2DEDBED("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"); // LabwrDetectionCMD
                        	Return_PlateExist = arrRetValues[0];
                        	Return_PlateDetectHeight_Raw = arrRetValues[1];
                        }
                        {
                        	NimbusChannel._07F627B7_317A_4B22_8781_B67752A4A0BD("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"); // MoveRelative
                        }
                        MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++"));
                        Return_PlateDetectHeight = Return_PlateDetectHeight_Raw - HHS_Zvariation;
                        Trace ("Height_HHS = ", Return_PlateDetectHeight);
                        Trace ("Height_HHS_Raw = ", Return_PlateDetectHeight_Raw);
                        MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++"));
                        Check_DWP = 1;
                        if (loopCounter25 == 2)
                        {
                        if (Return_PlateExist == 0)
                        {
                        dialogHandle_141.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_141.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_141.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_141.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight > 128.5)
                        {
                        dialogHandle_116.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_116.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_116.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_116.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight < 126)
                        {
                        dialogHandle_115.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_115.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_115.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_115.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        }
                        }
                        }
                        if (Return_PlateExist == 0)
                        {
                        dialogHandle_71.SetOutput(Translate("The DWP is not on the HHS (Heater & Shaker)."), "\n", Translate("Click OK to unlock the door and to place the plate in the correct position."));
                        if( 0 == dialogHandle_71.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_71.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_71.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_59.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_59.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight > 128.5)
                        {
                        dialogHandle_81.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        if( 0 == dialogHandle_81.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_81.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_81.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_65.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_65.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight < 126)
                        {
                        dialogHandle_63.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        if( 0 == dialogHandle_63.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_63.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_63.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_84.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_84.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        }
                        }
                        }
                        }
                      }
                      if (file1_SimOn == 0)
                      {
                        HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
                        HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
                      }
                      {
                        	NimbusChannel._AAAC4431_7BFF_414F_BEC0_638E8966FEB1("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"); // GetCORELabwrBySeq
                      }
                      {
                        	NimbusChannel._114615D6_29FF_496F_8045_904C6527C723("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"); // PutCoreLabwrBySeq
                      }
                      {
                        	NimbusChannel._07F627B7_317A_4B22_8781_B67752A4A0BD("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"); // MoveRelative
                      }
                      if (file1_SimOn == 0)
                      {
                        Check_DWP = 0;
                        {
                        loopCounter25 = 0;
                        while (Check_DWP == 0)
                        {
                        loopCounter25 = loopCounter25 + 1;
                        {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._BFF2123F_358B_418A_BBA5_AE17E2DEDBED("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"); // LabwrDetectionCMD
                        	Return_PlateExist = arrRetValues[0];
                        	Return_PlateDetectHeight_Raw = arrRetValues[1];
                        }
                        {
                        	NimbusChannel._07F627B7_317A_4B22_8781_B67752A4A0BD("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"); // MoveRelative
                        }
                        MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++"));
                        Return_PlateDetectHeight = Return_PlateDetectHeight_Raw - Magnet_Zvariation;
                        Trace ("Height_Magnet = ", Return_PlateDetectHeight);
                        Trace ("Height_Magnet_Raw = ", Return_PlateDetectHeight_Raw);
                        MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++"));
                        Check_DWP = 1;
                        if (loopCounter25 == 2)
                        {
                        if (Return_PlateExist == 0)
                        {
                        dialogHandle_144.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_144.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_144.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_144.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight > 115.5)
                        {
                        dialogHandle_119.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_119.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_119.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_119.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight < 110)
                        {
                        dialogHandle_140.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it position 5 correctly."));
                        if( 0 == dialogHandle_140.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_140.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_140.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        }
                        }
                        }
                        if (Return_PlateExist == 0)
                        {
                        dialogHandle_68.SetOutput(Translate("The DWP is not on the Magnet."), "\n", Translate("Click OK to unlock the door and to place the plate in the correct position."));
                        if( 0 == dialogHandle_68.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_68.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_68.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_76.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_76.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight > 115.5)
                        {
                        dialogHandle_62.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        if( 0 == dialogHandle_62.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_62.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_62.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_73.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_73.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight < 110)
                        {
                        dialogHandle_74.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        if( 0 == dialogHandle_74.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_74.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_74.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_72.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_72.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        }
                        }
                        }
                        }
                      }
                      if (file4_Start_Location == 40)
                      {
                        if (file1_SimOn == 0)
                        {
                        Check_DWP = 0;
                        {
                        loopCounter25 = 0;
                        while (Check_DWP == 0)
                        {
                        loopCounter25 = loopCounter25 + 1;
                        {
                        	NimbusChannel._AAAC4431_7BFF_414F_BEC0_638E8966FEB1("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"); // GetCORELabwrBySeq
                        }
                        {
                        	NimbusChannel._114615D6_29FF_496F_8045_904C6527C723("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"); // PutCoreLabwrBySeq
                        }
                        {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._BFF2123F_358B_418A_BBA5_AE17E2DEDBED("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"); // LabwrDetectionCMD
                        	Return_PlateExist = arrRetValues[0];
                        	Return_PlateDetectHeight_Raw = arrRetValues[1];
                        }
                        {
                        	NimbusChannel._07F627B7_317A_4B22_8781_B67752A4A0BD("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"); // MoveRelative
                        }
                        MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++"));
                        Return_PlateDetectHeight = Return_PlateDetectHeight_Raw - HHS_Zvariation;
                        Trace ("Height_HHS = ", Return_PlateDetectHeight);
                        Trace ("Height_HHS_Raw = ", Return_PlateDetectHeight_Raw);
                        MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++"));
                        Check_DWP = 1;
                        if (loopCounter25 == 2)
                        {
                        if (Return_PlateExist == 0)
                        {
                        dialogHandle_108.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_108.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_108.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_108.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight > 128.5)
                        {
                        dialogHandle_133.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_133.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_133.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_133.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight < 126)
                        {
                        dialogHandle_114.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_114.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_114.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_114.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        }
                        }
                        }
                        if (Return_PlateExist == 0)
                        {
                        dialogHandle_79.SetOutput(Translate("The DWP is not on the HHS (Heater & Shaker)."), "\n", Translate("Click OK to unlock the door and to place the plate in the correct position."));
                        if( 0 == dialogHandle_79.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_79.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_79.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_77.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_77.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight > 128.5)
                        {
                        dialogHandle_105.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        if( 0 == dialogHandle_105.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_105.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_105.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_85.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_85.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight < 126)
                        {
                        dialogHandle_82.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        if( 0 == dialogHandle_82.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_82.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_82.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_64.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_64.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        }
                        }
                        }
                        }
                        }
                        if (file1_SimOn == 0)
                        {
                        HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
                        HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
                        }
                      }
                    }
                  }
                  {
                    	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                  }
                  {
                    	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
                  }
                }
              }
            }
            else
            {
              if (TubeType == 11)
              {
                MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++\n+++++++++++++++  Verify DWP is in correct position +++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
                if (file1_SimOn == 0)
                {
                  Check_DWP = 0;
                  {
                    loopCounter25 = 0;
                    while (Check_DWP == 0)
                    {
                      loopCounter25 = loopCounter25 + 1;
                      {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._BFF2123F_358B_418A_BBA5_AE17E2DEDBED("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"); // LabwrDetectionCMD
                        	Return_PlateExist = arrRetValues[0];
                        	Return_PlateDetectHeight_Raw = arrRetValues[1];
                      }
                      {
                        	NimbusChannel._07F627B7_317A_4B22_8781_B67752A4A0BD("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"); // MoveRelative
                      }
                      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++"));
                      Return_PlateDetectHeight = Return_PlateDetectHeight_Raw - Magnet_Zvariation;
                      Trace ("Height_Magnet = ", Return_PlateDetectHeight);
                      Trace ("Height_Magnet_Raw = ", Return_PlateDetectHeight_Raw);
                      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++"));
                      Check_DWP = 1;
                      if (loopCounter25 == 2)
                      {
                        if (Return_PlateExist == 0)
                        {
                        dialogHandle_143.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_143.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_143.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_143.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight > 115.5)
                        {
                        dialogHandle_131.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_131.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_131.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_131.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight < 110)
                        {
                        dialogHandle_130.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_130.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_130.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_130.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        }
                        }
                      }
                      if (Return_PlateExist == 0)
                      {
                        {
                        	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
                        }
                        {
                        	NimbusChannel._DED83B4B_588B_45A9_B86F_0F12C4EF600A("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"); // MoveAbsolute
                        }
                        dialogHandle_10.SetOutput(Translate("The DWP is not on the Magnet."), "\n", Translate("Click OK to unlock the door and to place the plate in the correct position."));
                        if( 0 == dialogHandle_10.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_10.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_10.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_42.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_42.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                      }
                      else
                      {
                        if (Return_PlateDetectHeight < 110)
                        {
                        {
                        	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
                        }
                        dialogHandle_7.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        if( 0 == dialogHandle_7.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_7.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_7.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_40.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_40.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight > 115.5)
                        {
                        {
                        	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
                        }
                        dialogHandle_36.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        if( 0 == dialogHandle_36.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_36.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_36.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_27.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_27.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        }
                      }
                    }
                  }
                }
                {
                  	NimbusChannel._AAAC4431_7BFF_414F_BEC0_638E8966FEB1("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"); // GetCORELabwrBySeq
                }
                {
                  	NimbusChannel._114615D6_29FF_496F_8045_904C6527C723("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"); // PutCoreLabwrBySeq
                }
                {
                  	NimbusChannel._07F627B7_317A_4B22_8781_B67752A4A0BD("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"); // MoveRelative
                }
                if (file1_SimOn == 0)
                {
                  Check_DWP = 0;
                  {
                    loopCounter25 = 0;
                    while (Check_DWP == 0)
                    {
                      loopCounter25 = loopCounter25 + 1;
                      {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._BFF2123F_358B_418A_BBA5_AE17E2DEDBED("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"); // LabwrDetectionCMD
                        	Return_PlateExist = arrRetValues[0];
                        	Return_PlateDetectHeight_Raw = arrRetValues[1];
                      }
                      {
                        	NimbusChannel._07F627B7_317A_4B22_8781_B67752A4A0BD("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"); // MoveRelative
                      }
                      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++"));
                      Return_PlateDetectHeight = Return_PlateDetectHeight_Raw - HHS_Zvariation;
                      Trace ("Height_HHS = ", Return_PlateDetectHeight);
                      Trace ("Height_HHS_Raw = ", Return_PlateDetectHeight_Raw);
                      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++"));
                      Check_DWP = 1;
                      if (loopCounter25 == 2)
                      {
                        if (Return_PlateExist == 0)
                        {
                        dialogHandle_124.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_124.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_124.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_124.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight > 128.5)
                        {
                        dialogHandle_123.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_123.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_123.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_123.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight < 126)
                        {
                        dialogHandle_121.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_121.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_121.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_121.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        }
                        }
                      }
                      if (Return_PlateExist == 0)
                      {
                        dialogHandle_9.SetOutput(Translate("The DWP is not on the HHS (Heater & Shaker)."), "\n", Translate("Click OK to unlock the door and to place the plate in the correct position."));
                        if( 0 == dialogHandle_9.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_9.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_9.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_41.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_41.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                      }
                      else
                      {
                        if (Return_PlateDetectHeight > 128.5)
                        {
                        dialogHandle_21.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        if( 0 == dialogHandle_21.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_21.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_21.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_15.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_15.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight < 126)
                        {
                        dialogHandle_33.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        if( 0 == dialogHandle_33.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_33.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_33.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_49.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_49.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        }
                      }
                    }
                  }
                }
                if (file1_SimOn == 0)
                {
                  HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
                  HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
                }
                {
                  	NimbusChannel._AAAC4431_7BFF_414F_BEC0_638E8966FEB1("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"); // GetCORELabwrBySeq
                }
                {
                  	NimbusChannel._114615D6_29FF_496F_8045_904C6527C723("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"); // PutCoreLabwrBySeq
                }
                {
                  	NimbusChannel._07F627B7_317A_4B22_8781_B67752A4A0BD("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"); // MoveRelative
                }
                if (file1_SimOn == 0)
                {
                  Check_DWP = 0;
                  {
                    loopCounter25 = 0;
                    while (Check_DWP == 0)
                    {
                      loopCounter25 = loopCounter25 + 1;
                      {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._BFF2123F_358B_418A_BBA5_AE17E2DEDBED("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"); // LabwrDetectionCMD
                        	Return_PlateExist = arrRetValues[0];
                        	Return_PlateDetectHeight_Raw = arrRetValues[1];
                      }
                      {
                        	NimbusChannel._07F627B7_317A_4B22_8781_B67752A4A0BD("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"); // MoveRelative
                      }
                      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++"));
                      Return_PlateDetectHeight = Return_PlateDetectHeight_Raw - Magnet_Zvariation;
                      Trace ("Height_Magnet = ", Return_PlateDetectHeight);
                      Trace ("Height_Magnet_Raw = ", Return_PlateDetectHeight_Raw);
                      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++"));
                      Check_DWP = 1;
                      if (loopCounter25 == 2)
                      {
                        if (Return_PlateExist == 0)
                        {
                        dialogHandle_112.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_112.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_112.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_112.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight > 115.5)
                        {
                        dialogHandle_128.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_128.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_128.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_128.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight < 110)
                        {
                        dialogHandle_111.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_111.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_111.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_111.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        }
                        }
                      }
                      if (Return_PlateExist == 0)
                      {
                        dialogHandle_39.SetOutput(Translate("The DWP is not on the Magnet."), "\n", Translate("Click OK to unlock the door and to place the plate in the correct position."));
                        if( 0 == dialogHandle_39.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_39.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_39.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_37.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_37.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                      }
                      else
                      {
                        if (Return_PlateDetectHeight > 115.5)
                        {
                        dialogHandle_22.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        if( 0 == dialogHandle_22.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_22.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_22.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_8.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_8.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight < 110)
                        {
                        dialogHandle_50.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        if( 0 == dialogHandle_50.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_50.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_50.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_43.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_43.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        }
                      }
                    }
                  }
                }
                {
                  	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                }
                {
                  	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
                }
              }
            }
          }
          if (STEP < 7)
          {
            if (Chk_Tip_Usage_1ml_zero != 0)
            {
              Copy_Tip_Sequence = file4_Tip_Sequence;
              file4_Tip_Sequence = 1;
              if (file1_SimOn != 1)
              {
                if (STEP < 4)
                {
                  if (STEP != 2)
                  {
                    if (StepChk_Ctrdg_Flag > 0)
                    {
                      MECC::TraceComment(Translate("******* Check the Extraction Cartridge *******"));
                      A_Kit_Flag = 0;
                      if (file2_Extraction_Kit == 10)
                      {
                        A_Kit_Flag = 1;
                      }
                      if (A_Kit_Flag == 1)
                      {
                        No_Ctrdge_Error_Flag = 0;
                        {
                        loopCounter70 = 0;
                        while (No_Ctrdge_Error_Flag == 0)
                        {
                        loopCounter70 = loopCounter70 + 1;
                        No_Tip_Error_Flag = 0;
                        {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_146 ;
                        err.Clear();
                        SeqCopySequence(para_Tips, NimbusChannel.All_1000ul_Tips);
                        {
                        	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
                        }
                        No_Tip_Error_Flag = 1;
                        SeqCopySequence(para_Tips, NimbusChannel.All_1000ul_Tips);
                        errLabel_146 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        EXTRACTION_NIMBUS_V6::No_Tip_Error_Handling(NimbusChannel, file4_Tip_Sequence, NimbusChannel.All_1000ul_Tips, Cur_Tip_Position, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                        }
                        NimbusChannel.Tub_3.SetCurrentPosition(2);
                        NimbusChannel.Tub_3_2.SetCurrentPosition(2);
                        NimbusChannel.Tub_4.SetCurrentPosition(2);
                        NimbusChannel.Tub_4_2.SetCurrentPosition(2);
                        if (Sample_Cnt > STARMag_Remain)
                        {
                        onerror goto errLabel_147 ;
                        err.Clear();
                        NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        	Ctrdge_height = arrRetValues[1];
                        }
                        No_Ctrdge_Error_Flag = 1;
                        if (StepChk_WB1_Flag == 1)
                        {
                        if (Ctrdge_height < 90)
                        {
                        {
                        	NimbusChannel._DED83B4B_588B_45A9_B86F_0F12C4EF600A("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"); // MoveAbsolute
                        }
                        dialogHandle_31.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Click OK to unlock the door and add the ethanol to the WB1 of 2nd cartridge."));
                        if( 0 == dialogHandle_31.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_31.ShowOutput(Translate("Add absolute ethanol to the WB1"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_31.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_6.SetOutput(Translate("Please put the cartridge in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_6.ShowOutput(Translate("Add absolute ethanol to the WB1"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        	Ctrdge_height = arrRetValues[1];
                        }
                        if (Ctrdge_height < 90)
                        {
                        dialogHandle_118.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_118.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_118.ShowOutput(Translate("Add absolute ethanol to the WB1"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_118.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        }
                        }
                        NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        	Ctrdge_height = arrRetValues[2];
                        }
                        No_Ctrdge_Error_Flag = 1;
                        if (StepChk_WB2_Flag == 1)
                        {
                        if (Ctrdge_height < 65.5)
                        {
                        {
                        	NimbusChannel._DED83B4B_588B_45A9_B86F_0F12C4EF600A("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"); // MoveAbsolute
                        }
                        dialogHandle_28.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Click OK to unlock the door and add the ethanol to the WB2 of 2nd cartridge."));
                        if( 0 == dialogHandle_28.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_28.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_28.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_20.SetOutput(Translate("Please put the cartridge in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_20.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        	Ctrdge_height = arrRetValues[2];
                        }
                        if (Ctrdge_height < 65.5)
                        {
                        dialogHandle_122.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_122.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_122.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_122.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        }
                        }
                        errLabel_147 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_Ctrdge_Error_Flag = 0;
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        if (loopCounter70 == 2)
                        {
                        dialogHandle_107.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_107.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_107.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_107.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_16.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Click OK to unlock the door and to place the cartridge in the correct position."));
                        if( 0 == dialogHandle_16.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_16.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_16.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_30.SetOutput(Translate("Please put the cartridge in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_30.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        }   /* end if from skip handler if no error */
                        }
                        else
                        {
                        onerror goto errLabel_148 ;
                        err.Clear();
                        {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        	WB2_height = arrRetValues[1];
                        }
                        No_Ctrdge_Error_Flag = 1;
                        if (StepChk_WB1_Flag == 1)
                        {
                        if (STARMag_Remain == 96)
                        {
                        if (WB2_height < 90)
                        {
                        {
                        	NimbusChannel._DED83B4B_588B_45A9_B86F_0F12C4EF600A("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"); // MoveAbsolute
                        }
                        dialogHandle_23.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Click OK to unlock the door and add the ethanol to the WB1 cartridge."));
                        if( 0 == dialogHandle_23.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_23.ShowOutput(Translate("Add absolute ethanol to the WB1"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_23.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_17.SetOutput(Translate("Please put the cartridge in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_17.ShowOutput(Translate("Add absolute ethanol to the WB1"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        	WB2_height = arrRetValues[1];
                        }
                        if (WB2_height < 90)
                        {
                        dialogHandle_142.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_142.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_142.ShowOutput(Translate("Add absolute ethanol to the WB1"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_142.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        }
                        }
                        }
                        {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        	WB2_height = arrRetValues[2];
                        }
                        No_Ctrdge_Error_Flag = 1;
                        if (StepChk_WB2_Flag == 1)
                        {
                        if (STARMag_Remain == 96)
                        {
                        if (WB2_height < 65.5)
                        {
                        {
                        	NimbusChannel._DED83B4B_588B_45A9_B86F_0F12C4EF600A("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"); // MoveAbsolute
                        }
                        dialogHandle_3.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Click OK to unlock the door and add the ethanol to the WB2 cartridge."));
                        if( 0 == dialogHandle_3.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_3.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_3.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_26.SetOutput(Translate("Please put the cartridge in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_26.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        	WB2_height = arrRetValues[2];
                        }
                        if (WB2_height < 65.5)
                        {
                        dialogHandle_110.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_110.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_110.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_110.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        }
                        }
                        }
                        errLabel_148 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_Ctrdge_Error_Flag = 0;
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        if (loopCounter70 == 2)
                        {
                        dialogHandle_139.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_139.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_139.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_139.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_44.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Click OK to unlock the door and to place the cartridge in the correct position."));
                        if( 0 == dialogHandle_44.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_44.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_44.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_29.SetOutput(Translate("Please put the cartridge in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_29.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        }   /* end if from skip handler if no error */
                        }
                        }
                        }
                        No_Tip_Error_Flag = 0;
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        NimbusChannel.Tub_3.SetCurrentPosition(1);
                        NimbusChannel.Tub_3_2.SetCurrentPosition(1);
                        NimbusChannel.Tub_4.SetCurrentPosition(1);
                        NimbusChannel.Tub_4_2.SetCurrentPosition(1);
                      }
                      else
                      {
                        No_Ctrdge_Error_Flag = 0;
                        {
                        loopCounter70 = 0;
                        while (No_Ctrdge_Error_Flag == 0)
                        {
                        loopCounter70 = loopCounter70 + 1;
                        No_Tip_Error_Flag = 0;
                        {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_149 ;
                        err.Clear();
                        SeqCopySequence(para_Tips, NimbusChannel.All_1000ul_Tips);
                        {
                        	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
                        }
                        No_Tip_Error_Flag = 1;
                        SeqCopySequence(para_Tips, NimbusChannel.All_1000ul_Tips);
                        errLabel_149 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        EXTRACTION_NIMBUS_V6::No_Tip_Error_Handling(NimbusChannel, file4_Tip_Sequence, NimbusChannel.All_1000ul_Tips, Cur_Tip_Position, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                        }
                        if (file2_Extraction_Kit >= 11)
                        {
                        NimbusChannel.Tub_3.SetCurrentPosition(2);
                        NimbusChannel.Tub_3_2.SetCurrentPosition(2);
                        }
                        else
                        {
                        NimbusChannel.Tub_4.SetCurrentPosition(2);
                        NimbusChannel.Tub_4_2.SetCurrentPosition(2);
                        }
                        if (Sample_Cnt > STARMag_Remain)
                        {
                        onerror goto errLabel_150 ;
                        err.Clear();
                        if (file2_Extraction_Kit >= 11)
                        {
                        NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        	Ctrdge_height = arrRetValues[1];
                        }
                        No_Ctrdge_Error_Flag = 1;
                        if (StepChk_WB2_Flag == 1)
                        {
                        if (Ctrdge_height < 65.5)
                        {
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        dialogHandle_18.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Click OK to unlock the door and add the ethanol to the WB2 of 2nd cartridge."));
                        if( 0 == dialogHandle_18.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_18.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_18.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_45.SetOutput(Translate("Please put the cartridge in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_45.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        No_Ctrdge_Error_Flag = 0;
                        }
                        }
                        }
                        else
                        {
                        NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        	Ctrdge_height = arrRetValues[1];
                        }
                        No_Ctrdge_Error_Flag = 1;
                        if (StepChk_WB2_Flag == 1)
                        {
                        if (Ctrdge_height < 65.5)
                        {
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        dialogHandle_14.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Click OK to unlock the door and add the ethanol to the WB2 of 2nd cartridge."));
                        if( 0 == dialogHandle_14.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_14.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_14.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_35.SetOutput(Translate("Please put the cartridge in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_35.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        No_Ctrdge_Error_Flag = 0;
                        }
                        }
                        }
                        errLabel_150 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        if (loopCounter70 == 2)
                        {
                        dialogHandle_113.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_113.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_113.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_113.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_129.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Click OK to unlock the door and to place the cartridge in the correct position."));
                        if( 0 == dialogHandle_129.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_129.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_129.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_11.SetOutput(Translate("Please put the cartridge in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_11.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        }   /* end if from skip handler if no error */
                        }
                        else
                        {
                        onerror goto errLabel_151 ;
                        err.Clear();
                        if (file2_Extraction_Kit >= 11)
                        {
                        {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        	WB2_height = arrRetValues[1];
                        }
                        No_Ctrdge_Error_Flag = 1;
                        if (StepChk_WB2_Flag == 1)
                        {
                        if (STARMag_Remain == 96)
                        {
                        if (WB2_height < 65.5)
                        {
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        dialogHandle_19.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Click OK to unlock the door and add the ethanol to the WB2 cartridge."));
                        if( 0 == dialogHandle_19.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_19.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_19.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_38.SetOutput(Translate("Please put the cartridge in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_38.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        No_Ctrdge_Error_Flag = 0;
                        }
                        }
                        }
                        }
                        else
                        {
                        {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        	WB2_height = arrRetValues[1];
                        }
                        No_Ctrdge_Error_Flag = 1;
                        if (StepChk_WB2_Flag == 1)
                        {
                        if (STARMag_Remain == 96)
                        {
                        if (WB2_height < 65.5)
                        {
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        dialogHandle_48.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Click OK to unlock the door and add the ethanol to the WB2 cartridge."));
                        if( 0 == dialogHandle_48.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_48.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_48.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_24.SetOutput(Translate("Please put the cartridge in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_24.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        No_Ctrdge_Error_Flag = 0;
                        }
                        }
                        }
                        }
                        errLabel_151 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        if (loopCounter70 == 2)
                        {
                        dialogHandle_138.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_138.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_138.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_138.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_127.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Click OK to unlock the door and to place the cartridge in the correct position."));
                        if( 0 == dialogHandle_127.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_127.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_127.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_34.SetOutput(Translate("Please put the cartridge in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_34.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        }   /* end if from skip handler if no error */
                        }
                        }
                        }
                        No_Tip_Error_Flag = 0;
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        if (file2_Extraction_Kit >= 11)
                        {
                        NimbusChannel.Tub_3.SetCurrentPosition(1);
                        NimbusChannel.Tub_3_2.SetCurrentPosition(1);
                        }
                        else
                        {
                        NimbusChannel.Tub_4.SetCurrentPosition(1);
                        NimbusChannel.Tub_4_2.SetCurrentPosition(1);
                        }
                      }
                    }
                    if (StepChk_PK_Flag > 0)
                    {
                      MECC::TraceComment(Translate("******* Check the PK *******"));
                      No_PK_Error_Flag = 0;
                      if (file2_Extraction_Kit == 12)
                      {
                        {
                        loopCounterPKChk = 0;
                        while (No_PK_Error_Flag == 0)
                        {
                        loopCounterPKChk = loopCounterPKChk + 1;
                        No_Tip_Error_Flag = 0;
                        {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_152 ;
                        err.Clear();
                        SeqCopySequence(para_Tips, NimbusChannel.All_1000ul_Tips);
                        {
                        	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
                        }
                        No_Tip_Error_Flag = 1;
                        SeqCopySequence(para_Tips, NimbusChannel.All_1000ul_Tips);
                        errLabel_152 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        EXTRACTION_NIMBUS_V6::No_Tip_Error_Handling(NimbusChannel, file4_Tip_Sequence, NimbusChannel.All_1000ul_Tips, Cur_Tip_Position, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                        }
                        onerror goto errLabel_153 ;
                        err.Clear();
                        if (Sample_Cnt <= STARMag_Remain)
                        {
                        NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        No_PK_Error_Flag = 1;
                        }
                        else
                        {
                        NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        No_PK_Error_Flag = 1;
                        }
                        errLabel_153 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_PK_Error_Flag = 0;
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        if (loopCounterPKChk == 2)
                        {
                        dialogHandle_136.SetOutput(Translate("The PK tube is not installed."), "\n", Translate("Place the tube in the correct position and Run again."));
                        if( 0 == dialogHandle_136.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_136.ShowOutput(Translate("PK Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_136.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_58.SetOutput(Translate("The PK tube is not installed."), "\n", Translate("Click OK to unlock the door and to place the tube in the correct position."));
                        if( 0 == dialogHandle_58.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_58.ShowOutput(Translate("PK Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_58.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_57.SetOutput(Translate("Please put the tube in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_57.ShowOutput(Translate("PK Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        }   /* end if from skip handler if no error */
                        }
                        }
                        No_Tip_Error_Flag = 0;
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                      }
                      else
                      {
                        if (file2_Product_No == "PRODUCT_EXT_019")
                        {
                        {
                        loopCounterPKChk = 0;
                        while (No_PK_Error_Flag == 0)
                        {
                        loopCounterPKChk = loopCounterPKChk + 1;
                        No_Tip_Error_Flag = 0;
                        {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_154 ;
                        err.Clear();
                        SeqCopySequence(para_Tips, NimbusChannel.All_1000ul_Tips);
                        {
                        	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
                        }
                        No_Tip_Error_Flag = 1;
                        SeqCopySequence(para_Tips, NimbusChannel.All_1000ul_Tips);
                        errLabel_154 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        EXTRACTION_NIMBUS_V6::No_Tip_Error_Handling(NimbusChannel, file4_Tip_Sequence, NimbusChannel.All_1000ul_Tips, Cur_Tip_Position, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                        }
                        onerror goto errLabel_155 ;
                        err.Clear();
                        if (Sample_Cnt <= STARMag_Remain)
                        {
                        NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        No_PK_Error_Flag = 1;
                        }
                        else
                        {
                        NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        No_PK_Error_Flag = 1;
                        }
                        errLabel_155 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_PK_Error_Flag = 0;
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        if (loopCounterPKChk == 2)
                        {
                        dialogHandle_126.SetOutput(Translate("The PK tube is not installed."), "\n", Translate("Place the tube in the correct position and Run again."));
                        if( 0 == dialogHandle_126.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_126.ShowOutput(Translate("PK Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_126.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_91.SetOutput(Translate("The PK tube is not installed."), "\n", Translate("Click OK to unlock the door and to place the tube in the correct position."));
                        if( 0 == dialogHandle_91.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_91.ShowOutput(Translate("PK Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_91.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_90.SetOutput(Translate("Please put the tube in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_90.ShowOutput(Translate("PK Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        }   /* end if from skip handler if no error */
                        }
                        }
                        No_Tip_Error_Flag = 0;
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        }
                        else
                        {
                        {
                        loopCounterPKChk = 0;
                        while (No_PK_Error_Flag == 0)
                        {
                        loopCounterPKChk = loopCounterPKChk + 1;
                        No_Tip_Error_Flag = 0;
                        {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_156 ;
                        err.Clear();
                        SeqCopySequence(para_Tips, NimbusChannel.All_1000ul_Tips);
                        {
                        	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
                        }
                        No_Tip_Error_Flag = 1;
                        SeqCopySequence(para_Tips, NimbusChannel.All_1000ul_Tips);
                        errLabel_156 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        EXTRACTION_NIMBUS_V6::No_Tip_Error_Handling(NimbusChannel, file4_Tip_Sequence, NimbusChannel.All_1000ul_Tips, Cur_Tip_Position, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                        }
                        onerror goto errLabel_157 ;
                        err.Clear();
                        NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        No_PK_Error_Flag = 1;
                        errLabel_157 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_PK_Error_Flag = 0;
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        if (loopCounterPKChk == 2)
                        {
                        dialogHandle_120.SetOutput(Translate("The PK tube is not installed."), "\n", Translate("Place the tube in the correct position and Run again."));
                        if( 0 == dialogHandle_120.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_120.ShowOutput(Translate("PK Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_120.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_88.SetOutput(Translate("The PK tube is not installed."), "\n", Translate("Click OK to unlock the door and to place the tube in the correct position."));
                        if( 0 == dialogHandle_88.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_88.ShowOutput(Translate("PK Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_88.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_89.SetOutput(Translate("Please put the tube in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_89.ShowOutput(Translate("PK Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        }   /* end if from skip handler if no error */
                        }
                        }
                        No_Tip_Error_Flag = 0;
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        }
                      }
                    }
                    if (StepChk_Bead_Flag > 0)
                    {
                      MECC::TraceComment(Translate("******* Check the Bead *******"));
                      No_Bead_Error_Flag = 0;
                      {
                        loopCounterBeadChk = 0;
                        while (No_Bead_Error_Flag == 0)
                        {
                        loopCounterBeadChk = loopCounterBeadChk + 1;
                        No_Tip_Error_Flag = 0;
                        {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_158 ;
                        err.Clear();
                        SeqCopySequence(para_Tips, NimbusChannel.All_1000ul_Tips);
                        {
                        	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
                        }
                        No_Tip_Error_Flag = 1;
                        SeqCopySequence(para_Tips, NimbusChannel.All_1000ul_Tips);
                        errLabel_158 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        EXTRACTION_NIMBUS_V6::No_Tip_Error_Handling(NimbusChannel, file4_Tip_Sequence, NimbusChannel.All_1000ul_Tips, Cur_Tip_Position, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                        }
                        onerror goto errLabel_159 ;
                        err.Clear();
                        NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        if (Sample_Cnt > STARMag_Remain)
                        {
                        NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        }
                        No_Bead_Error_Flag = 1;
                        errLabel_159 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_Bead_Error_Flag = 0;
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        if (loopCounterBeadChk == 2)
                        {
                        dialogHandle_106.SetOutput(Translate("The Bead tube is not installed."), "\n", Translate("Place the tube in the correct position and Run again."));
                        if( 0 == dialogHandle_106.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_106.ShowOutput(Translate("Bead Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_106.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_4.SetOutput(Translate("The Bead tube is not installed."), "\n", Translate("Click OK to unlock the door and to place the tube in the correct position."));
                        if( 0 == dialogHandle_4.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_4.ShowOutput(Translate("Bead Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_4.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_46.SetOutput(Translate("Please put the tube in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_46.ShowOutput(Translate("Bead Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        }   /* end if from skip handler if no error */
                        }
                      }
                      No_Tip_Error_Flag = 0;
                      {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                      }
                    }
                    if (StepChk_IC_Flag > 0)
                    {
                      MECC::TraceComment(Translate("******* Check the IC *******"));
                      if (Used_IC_No > 0)
                      {
                        No_IC_Error_Flag = 0;
                        {
                        loopCounterICChk = 0;
                        while (No_IC_Error_Flag == 0)
                        {
                        loopCounterICChk = loopCounterICChk + 1;
                        No_Tip_Error_Flag = 0;
                        {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_160 ;
                        err.Clear();
                        SeqCopySequence(para_Tips, NimbusChannel.All_1000ul_Tips);
                        {
                        	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
                        }
                        Cnt_ChPattern_Chk_IC = ChPattern_Chk_IC;
                        StrReplace(Cnt_ChPattern_Chk_IC, Translate("0"), Translate(""));
                        Cnt_Tip_pickup = StrGetLength(Cnt_ChPattern_Chk_IC);
                        Trace ("ChPattern_Chk_IC = " , ChPattern_Chk_IC );
                        Trace ("Cnt_ChPattern_Chk_IC = " , Cnt_ChPattern_Chk_IC );
                        Trace ("Cnt_Tip_pickup = " , Cnt_Tip_pickup );
                        {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._FBC738C7_FA89_473A_9658_B17A2DE103C6("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"); // GetChannelStatus
                        	Use_1ch = arrRetValues[0];
                        	Use_2ch = arrRetValues[3];
                        	Use_3ch = arrRetValues[6];
                        	Use_4ch = arrRetValues[9];
                        }
                        Cnt_picked_up_Tip = 0;
                        Cnt_picked_up_Tip = Use_1ch + Use_2ch + Use_3ch + Use_4ch ;
                        Trace ("Use_1ch = " , Use_1ch );
                        Trace ("Use_2ch = " , Use_2ch );
                        Trace ("Use_3ch = " , Use_3ch );
                        Trace ("Use_4ch = " , Use_4ch );
                        Trace ("Cnt_picked_up_Tip = " , Cnt_picked_up_Tip );
                        No_Tip_Error_Flag = 1;
                        if (Cnt_picked_up_Tip < Cnt_Tip_pickup)
                        {
                        EXTRACTION_NIMBUS_V6::No_Tip_Error_Handling(NimbusChannel, file4_Tip_Sequence, para_Tips, Cur_Tip_Position, para_Tips, para_Tips);
                        No_Tip_Error_Flag = 0;
                        }
                        SeqCopySequence(para_Tips, NimbusChannel.All_1000ul_Tips);
                        errLabel_160 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        EXTRACTION_NIMBUS_V6::No_Tip_Error_Handling(NimbusChannel, file4_Tip_Sequence, NimbusChannel.All_1000ul_Tips, Cur_Tip_Position, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                        }
                        onerror goto errLabel_161 ;
                        err.Clear();
                        NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        No_IC_Error_Flag = 1;
                        errLabel_161 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_IC_Error_Flag = 0;
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        if (loopCounterICChk == 2)
                        {
                        dialogHandle_117.SetOutput(Translate("The IC is not installed."), "\n", Translate("Place the tube in the correct position and Run again."));
                        if( 0 == dialogHandle_117.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_117.ShowOutput(Translate("IC Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_117.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_25.SetOutput(Translate("The IC tube(s) are not installed."), "\n", Translate("Click OK to unlock the door and to place the tube in the correct position."));
                        if( 0 == dialogHandle_25.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_25.ShowOutput(Translate("IC Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_25.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_12.SetOutput(Translate("Please put the tube in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_12.ShowOutput(Translate("IC Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        }   /* end if from skip handler if no error */
                        }
                        }
                        No_Tip_Error_Flag = 0;
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        if (Used_IC_No >= 5)
                        {
                        No_IC_Error_Flag_2nd = 0;
                        {
                        loopCounterICChk_2nd = 0;
                        while (No_IC_Error_Flag_2nd == 0)
                        {
                        loopCounterICChk_2nd = loopCounterICChk_2nd + 1;
                        No_Tip_Error_Flag = 0;
                        {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_162 ;
                        err.Clear();
                        SeqCopySequence(para_Tips, NimbusChannel.All_1000ul_Tips);
                        {
                        	NimbusChannel._935A540D_7DE1_4DA5_8C65_398305BFFDE9("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"); // TipPickup
                        }
                        Cnt_ChPattern_Chk_IC_2nd = ChPattern_Chk_IC_2nd;
                        StrReplace(Cnt_ChPattern_Chk_IC_2nd, Translate("0"), Translate(""));
                        Cnt_Tip_pickup = StrGetLength(Cnt_ChPattern_Chk_IC_2nd);
                        Trace ("ChPattern_Chk_IC_2nd = " , ChPattern_Chk_IC_2nd );
                        Trace ("Cnt_ChPattern_Chk_IC_2nd = " , Cnt_ChPattern_Chk_IC_2nd );
                        Trace ("Cnt_Tip_pickup = " , Cnt_Tip_pickup );
                        {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._FBC738C7_FA89_473A_9658_B17A2DE103C6("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"); // GetChannelStatus
                        	Use_1ch = arrRetValues[0];
                        	Use_2ch = arrRetValues[3];
                        	Use_3ch = arrRetValues[6];
                        	Use_4ch = arrRetValues[9];
                        }
                        Cnt_picked_up_Tip = 0;
                        Cnt_picked_up_Tip = Use_1ch + Use_2ch + Use_3ch + Use_4ch ;
                        Trace ("Use_1ch = " , Use_1ch );
                        Trace ("Use_2ch = " , Use_2ch );
                        Trace ("Use_3ch = " , Use_3ch );
                        Trace ("Use_4ch = " , Use_4ch );
                        Trace ("Cnt_picked_up_Tip = " , Cnt_picked_up_Tip );
                        No_Tip_Error_Flag = 1;
                        if (Cnt_picked_up_Tip < Cnt_Tip_pickup)
                        {
                        EXTRACTION_NIMBUS_V6::No_Tip_Error_Handling(NimbusChannel, file4_Tip_Sequence, para_Tips, Cur_Tip_Position, para_Tips, para_Tips);
                        No_Tip_Error_Flag = 0;
                        }
                        SeqCopySequence(para_Tips, NimbusChannel.All_1000ul_Tips);
                        errLabel_162 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        EXTRACTION_NIMBUS_V6::No_Tip_Error_Handling(NimbusChannel, file4_Tip_Sequence, para_Tips, Cur_Tip_Position, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                        }
                        onerror goto errLabel_163 ;
                        err.Clear();
                        NimbusChannel.Seq_Chk_IC.SetCurrentPosition(5);
                        NimbusChannel._8F4B230A_4F8D_492F_948E_4D3E69DBECC6("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"); // Aspirate
                        No_IC_Error_Flag_2nd = 1;
                        errLabel_163 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_IC_Error_Flag_2nd = 0;
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        if (loopCounterICChk_2nd == 2)
                        {
                        dialogHandle_125.SetOutput(Translate("The IC is not installed."), "\n", Translate("Place the tube in the correct position and Run again."));
                        if( 0 == dialogHandle_125.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_125.ShowOutput(Translate("IC Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_125.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_47.SetOutput(Translate("The IC tube(s) are not installed."), "\n", Translate("Click OK to unlock the door and to place the tube in the correct position."));
                        if( 0 == dialogHandle_47.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_47.ShowOutput(Translate("IC Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_47.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_5.SetOutput(Translate("Please put the tube in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_5.ShowOutput(Translate("IC Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        }   /* end if from skip handler if no error */
                        }
                        }
                        No_Tip_Error_Flag = 0;
                        {
                        	NimbusChannel._413D5718_074F_494B_8846_F959B3FA6EFF("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"); // TipEject
                        }
                        }
                      }
                    }
                  }
                }
              }
              file4_Tip_Sequence = Copy_Tip_Sequence;
            }
          }
        }
        Set_Parameter();
        Tip_300ul = 0;
        Tip_1000ul = 0;
        TipsOnDeck_1000_start = NimbusChannel.All_1000ul_Tips.GetCurrentPosition();
        TipsOnDeck_1000_end = NimbusChannel.All_1000ul_Tips.GetCount();
        TipsOnDeck_300_start = NimbusChannel.All_300ul_Tips.GetCurrentPosition();
        TipsOnDeck_300_end = NimbusChannel.All_300ul_Tips.GetCount();
        MECC::TraceComment(Translate("===================================================\n================= Tip Calculation =================\n==================================================="));
        Tip_1000ul = TipsOnDeck_1000_end - TipsOnDeck_1000_start + 1;
        Tip_300ul = TipsOnDeck_300_end - TipsOnDeck_300_start + 1;
        if (TipsOnDeck_1000_start == 0)
        {
             Tip_1000ul = 0;
        }
        if (TipsOnDeck_300_start == 0)
        {
             Tip_300ul = 0;
        }
        Trace ("TipsOnDeck_1000_start = ", TipsOnDeck_1000_start);
        Trace ("TipsOnDeck_1000_end = ", TipsOnDeck_1000_end);
        Trace ("Tip_1000ul = ", Tip_1000ul);
        Trace ("TipsOnDeck_300_start = ", TipsOnDeck_300_start);
        Trace ("TipsOnDeck_300_end = ", TipsOnDeck_300_end);
        Trace ("Tip_300ul = ", Tip_300ul);
        MECC::TraceComment(Translate("===================================================\n===================================================\n==================================================="));
        if (file4_SubMethod == "Disp_PKmix")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, "- Barcode ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_NIMBUS_V6::Disp_PKmix(NimbusChannel, Sample_Cnt_Ini, para_Liquid_Class, para_Volume, para_Tips, para_Asp_position, para_Asp_Submerge_Depth, para_Disp_Base1, para_Disp_Base4, para_Disp_Bottom_Height, para_Disp_Retract_Distance, file4_Tip_Sequence, para_Disp_cLLD_On, para_Disp_Submerge_Depth, file2_Extraction_Kit, para_Asp_position_2nd, STARMag_Remain, file2_Product_No);
        }
        if (file4_SubMethod == "Disp_IC")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, "- Barcode ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_NIMBUS_V6::Disp_IC(NimbusChannel, para_Asp_cLLD_On, para_Asp_Submerge_Depth, para_Asp_position, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_ASD, para_Disp_position, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Liquid_Class, para_Tips, para_Volume, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file4_Disp_position, para_Disp_Submerge_Depth, para_PreAliq_Disp_Submerge_Depth, Translate("0000"), SeqGetTotal_para_Disp_position, file4_Tip_Sequence, para_Disp_cLLD_On);
        }
        if (file4_SubMethod == "Disp_Sample")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          if (STEP >= 7)
          {
            if (file1_SimOn == 0)
            {
              HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
            }
          }
          EXTRACTION_NIMBUS_V6::Disp_Sample(NimbusChannel, Sample_Cnt, ChPattern_Chk, ChPattern_Remain, ChPattern_Remain2, para_Asp_position, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_Asp_cLLD_On, para_Asp_Submerge_Depth, file2_Clot, Clot_Occurs, file2_Product_No, file4_Tip_Sequence, NimbusChannel.DWP96_HHS_Base8, file1_SimOn, Seq_SampleRacks, NimbusChannel.DWP96_HHS_Base1, NimbusChannel.DWP96_HHS_Base4, NimbusChannel.DWP96_HHS_Base8, para_Disp_cLLD_On, para_Disp_Bottom_Height);
          if (STEP >= 7)
          {
            if (file1_SimOn == 0)
            {
              HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
            }
          }
          if (file2_Clot == 1)
          {
            if (Clot_Occurs == 1)
            {
              if (STEP < 7)
              {
                {
                  	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
                }
                {
                  	NimbusChannel._DED83B4B_588B_45A9_B86F_0F12C4EF600A("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"); // MoveAbsolute
                }
                dialogHandle_52.SetOutput(Translate("Clot was detected or liquid was not correctly aspirated."), "\n", Translate("Click OK, and then check the location of the samples indicated on the pop-up screen."));
                if( 0 == dialogHandle_52.PlaySound("C:\\Seegene_Method_Setting\\Clot Error Alarm.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_52.ShowOutput(Translate("Clot Detected or Liquid Not Correctly Aspirated"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_52.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                {
                  	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                }
                dialogHandle_51.SetOutput(Translate("Load a 96-DWP on the HHS (Heater & Shaker) and close the door."), "\n", Translate("If you are ready to resume, click OK."));
                dialogHandle_51.ShowOutput(Translate("Clot Detected or Liquid Not Correctly Aspirated"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                {
                  	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                }
                HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
                HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
                if (file2_Product_No != "PRODUCT_EXT_016")
                {
                  if (file2_Product_No != "PRODUCT_EXT_019")
                  {
                    if (file1_SimOn == 0)
                    {
                      Check_DWP = 0;
                      {
                        loopCounter25 = 0;
                        while (Check_DWP == 0)
                        {
                        loopCounter25 = loopCounter25 + 1;
                        {
                        	variable arrRetValues[];
                        	arrRetValues = NimbusChannel._BFF2123F_358B_418A_BBA5_AE17E2DEDBED("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"); // LabwrDetectionCMD
                        	Return_PlateExist = arrRetValues[0];
                        	Return_PlateDetectHeight_Raw = arrRetValues[1];
                        }
                        {
                        	NimbusChannel._07F627B7_317A_4B22_8781_B67752A4A0BD("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"); // MoveRelative
                        }
                        MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++"));
                        Return_PlateDetectHeight = Return_PlateDetectHeight_Raw - HHS_Zvariation;
                        Trace ("Height_HHS = ", Return_PlateDetectHeight);
                        Trace ("Height_HHS_Raw = ", Return_PlateDetectHeight_Raw);
                        MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++"));
                        Check_DWP = 1;
                        if (loopCounter25 == 2)
                        {
                        if (Return_PlateExist == 0)
                        {
                        dialogHandle_109.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_109.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_109.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_109.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight > 128.5)
                        {
                        dialogHandle_132.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_132.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_132.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_132.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight < 126)
                        {
                        dialogHandle_137.SetOutput(Translate("Method will abort because DWP is not correctly positioned."), "\n", Translate("Please check the position of DWP and place it on position 5 correctly."));
                        if( 0 == dialogHandle_137.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_137.ShowOutput(Translate("Method will abort"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_137.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        }
                        }
                        }
                        if (Return_PlateExist == 0)
                        {
                        dialogHandle_80.SetOutput(Translate("The DWP is not on the HHS (Heater & Shaker)."), "\n", Translate("Click OK to unlock the door and to place the plate in the correct position."));
                        if( 0 == dialogHandle_80.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_80.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_80.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_60.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_60.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight > 128.5)
                        {
                        dialogHandle_67.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        if( 0 == dialogHandle_67.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_67.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_67.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_75.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_75.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        else
                        {
                        if (Return_PlateDetectHeight < 126)
                        {
                        dialogHandle_83.SetOutput(Translate("Please put the DWP in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        if( 0 == dialogHandle_83.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_83.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_83.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        {
                        	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                        }
                        dialogHandle_61.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                        dialogHandle_61.ShowOutput(Translate("96-DWP Not Correctly Mounted"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        {
                        	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                        }
                        Check_DWP = 0;
                        }
                        }
                        }
                        }
                      }
                    }
                    if (file1_SimOn == 0)
                    {
                      HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
                      HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
                    }
                  }
                }
              }
              else
              {
                if (STEP == 8)
                {
                  {
                    	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
                  }
                  dialogHandle_55.SetOutput(Translate("Clot was detected or liquid was not correctly aspirated."), "\n", Translate("Click OK, and then check the location of the samples indicated on the pop-up screen."));
                  if( 0 == dialogHandle_55.PlaySound("C:\\Seegene_Method_Setting\\Clot Error Alarm.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_55.ShowOutput(Translate("Clot Detected or Liquid Not Correctly Aspirated"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_55.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  {
                    	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                  }
                  dialogHandle_53.SetOutput(Translate("Place a 96 well-plate from the HHS (Heater & Shaker)"), "\n", Translate("to PCR instrument for extraction free."));
                  dialogHandle_53.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  dialogHandle_99.SetOutput(Translate("If you are ready to PCR setup,"), "\n", Translate("load the plate on the HHS (Heater & Shaker),"), "\n", Translate("close the door and click OK."));
                  dialogHandle_99.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  {
                    	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                  }
                  EXTRACTION_NIMBUS_V6::HHS_Initialize(file1_SimOn, HHS1);
                }
                if (STEP == 10)
                {
                  {
                    	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
                  }
                  dialogHandle_92.SetOutput(Translate("Clot was detected or liquid was not correctly aspirated."), "\n", Translate("Click OK, and then check the location of the samples indicated on the pop-up screen."));
                  if( 0 == dialogHandle_92.PlaySound("C:\\Seegene_Method_Setting\\Clot Error Alarm.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_92.ShowOutput(Translate("Clot Detected or Liquid Not Correctly Aspirated"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_92.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  {
                    	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                  }
                  dialogHandle_96.SetOutput(Translate("Place a 96 well-plate from the HHS (Heater & Shaker)"), "\n", Translate("to PCR instrument for extraction free."));
                  dialogHandle_96.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  dialogHandle_100.SetOutput(Translate("If you are ready to PCR setup,"), "\n", Translate("load the plate on the HHS (Heater & Shaker),"), "\n", Translate("close the door and click OK."));
                  dialogHandle_100.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  {
                    	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                  }
                  EXTRACTION_NIMBUS_V6::HHS_Initialize(file1_SimOn, HHS1);
                }
              }
            }
            else
            {
              if (STEP == 8)
              {
                {
                  	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
                }
                dialogHandle_102.SetOutput(Translate("Place a 96 well-plate from the HHS (Heater & Shaker)"), "\n", Translate("to PCR instrument for extraction free."));
                if( 0 == dialogHandle_102.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_102.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_102.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                {
                  	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                }
                dialogHandle_54.SetOutput(Translate("If you are ready to PCR setup,"), "\n", Translate("load the plate on the HHS (Heater & Shaker),"), "\n", Translate("close the door and click OK."));
                dialogHandle_54.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                {
                  	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                }
                EXTRACTION_NIMBUS_V6::HHS_Initialize(file1_SimOn, HHS1);
              }
              if (STEP == 10)
              {
                {
                  	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
                }
                dialogHandle_104.SetOutput(Translate("Place a 96 well-plate from the HHS (Heater & Shaker)"), "\n", Translate("to PCR instrument for extraction free."));
                if( 0 == dialogHandle_104.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_104.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_104.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                {
                  	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
                }
                dialogHandle_94.SetOutput(Translate("If you are ready to PCR setup,"), "\n", Translate("load the plate on the HHS (Heater & Shaker),"), "\n", Translate("close the door and click OK."));
                dialogHandle_94.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                {
                  	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
                }
                EXTRACTION_NIMBUS_V6::HHS_Initialize(file1_SimOn, HHS1);
              }
            }
          }
          else
          {
            if (STEP == 8)
            {
              {
                	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
              }
              dialogHandle_101.SetOutput(Translate("Place a 96 well-plate from the HHS (Heater & Shaker)"), "\n", Translate("to PCR instrument for extraction free."));
              if( 0 == dialogHandle_101.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              dialogHandle_101.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              if( 0 == dialogHandle_101.PlaySound("") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              {
                	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
              }
              dialogHandle_97.SetOutput(Translate("If you are ready to PCR setup,"), "\n", Translate("load the plate on the HHS (Heater & Shaker),"), "\n", Translate("close the door and click OK."));
              dialogHandle_97.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              {
                	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
              }
              EXTRACTION_NIMBUS_V6::HHS_Initialize(file1_SimOn, HHS1);
            }
            if (STEP == 10)
            {
              {
                	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
              }
              dialogHandle_95.SetOutput(Translate("Place a 96 well-plate from the HHS (Heater & Shaker)"), "\n", Translate("to PCR instrument for extraction free."));
              dialogHandle_95.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              {
                	NimbusChannel._BFF8FCA9_DB1D_4131_B050_488BBDADFF87("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"); // UnlockDoor
              }
              dialogHandle_98.SetOutput(Translate("If you are ready to PCR setup,"), "\n", Translate("load the plate on the HHS (Heater & Shaker),"), "\n", Translate("close the door and click OK."));
              dialogHandle_98.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              {
                	NimbusChannel._D33DB0C7_520C_4A59_956D_FBCB95992DB4("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"); // LockDoor
              }
              EXTRACTION_NIMBUS_V6::HHS_Initialize(file1_SimOn, HHS1);
            }
          }
        }
        if (file4_SubMethod == "Incubate")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_NIMBUS_V6::Incubate(para_Incu_Time, para_Incu_Temp, para_Incu_Speed, file1_SimOn, HHS1);
        }
        if (file4_SubMethod == "Move_DWP")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Move_DWP(para_Start_Location, para_Target_Location, para_Check_DWP);
          if (file1_SimOn == 0)
          {
            if (file4_Target_Location == 40)
            {
              HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
              HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
            }
          }
        }
        if (file4_SubMethod == "DispAndWaste_Buffer")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_NIMBUS_V6::DispAndWaste_Buffer(NimbusChannel, Sample_Cnt, Sample_Cnt_Ini, ChPattern_Chk, ChPattern_Remain, ChPattern_Remain2, para_Asp_Base1, para_Asp_Base4, para_Asp_Base8, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Disp_Base1, para_Disp_Base4, para_Disp_Base8, para_Disp_position, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, STARMag_Remain, seq_Liquidwaste, file4_Tip_Sequence, para_Asp_ADC_On);
        }
        if (file4_SubMethod == "Disp_Bead")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_NIMBUS_V6::Disp_Bead(NimbusChannel, Sample_Cnt, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Premix_ASD, para_Disp_Base1, para_Disp_Base4, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Liquid_Class, para_Tips, para_Volume, STARMag_Remain, para_PreAliq_Volume, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, Loop_Seq_0, Loop_Seq_1, Loop_Seq_2, Seq_Shaker_1_Bead, Tub_2_Remain, para_BB_Position, para_BB_Position_2nd, para_Bead_Position, para_Bead_Position_2nd, para_Liquid_Class_2, file4_Tip_Sequence, file2_Product_No);
        }
        if (file4_SubMethod == "Disp_Buffer")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_NIMBUS_V6::Disp_Buffer(NimbusChannel, Sample_Cnt, Sample_Cnt_Ini, ChPattern_Chk, ChPattern_Remain, ChPattern_Remain2, para_Asp_Base1, para_Asp_Base4, para_Asp_Base8, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_Base1, para_Disp_Base4, para_Disp_Base8, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, STARMag_Remain, para_PreAliq_Disp_cLLD_On, para_PreAliq_Disp_Submerge_Depth, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file4_Tip_Sequence, file4_Step_Name, file2_Extraction_Kit);
        }
        if (file4_SubMethod == "Disp_Water")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          if (STEP >= 7)
          {
            if (file1_SimOn == 0)
            {
              HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
            }
          }
          EXTRACTION_NIMBUS_V6::Disp_Water(NimbusChannel, Sample_Cnt, Sample_Cnt_Ini, ChPattern_Chk, ChPattern_Remain, ChPattern_Remain2, para_Asp_Base1, para_Asp_Base4, para_Asp_Base8, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_Base1, para_Disp_Base4, para_Disp_Base8, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, STARMag_Remain, para_PreAliq_Disp_cLLD_On, para_PreAliq_Disp_Submerge_Depth, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file4_Tip_Sequence, file4_Step_Name, file2_Extraction_Kit);
          if (STEP >= 7)
          {
            if (file1_SimOn == 0)
            {
              HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
            }
          }
        }
        if (file4_SubMethod == "WasteBuffer")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_NIMBUS_V6::WasteBuffer(NimbusChannel, Sample_Cnt, ChPattern_Chk, ChPattern_Remain, ChPattern_Remain2, para_Asp_cLLD_On, para_Asp_position, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_ADC_On, para_Disp_position, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Liquid_Class, para_Tips, para_Volume, STARMag_Remain, file4_Tip_Sequence, para_Reuse_Tip);
        }
        if (file4_SubMethod == "Start_Temp_HHS1")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_NIMBUS_V6::Start_Temp_HHS1(file1_SimOn, HHS1, para_Incu_Temp);
        }
        if (file4_SubMethod == "Stop_Temp_HHS1")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_NIMBUS_V6::Stop_Temp_HHS1(file1_SimOn, HHS1);
        }
        if (file4_SubMethod == "Build_2X_Enzyme_1")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          PCR_SET_UP_NIMBUS_V6::Build_2X_Enzyme_1(NimbusChannel, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_Disp_cLLD_On, para_PreAliq_Disp_Submerge_Depth, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file2_Asp_position_2nd, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, Random_Access, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, file4_Disp_position, file1_SimOn, file4_Step_Name, file4_Tip_Sequence, PCR_Remain_PRODUCT_001, PCR_Remain_PRODUCT_002, PCR_Remain_PRODUCT_003, PCR_Remain_PRODUCT_004, file2_Set_No, file4_No, file2_2X_Enzyme_Height, file2_Plate);
        }
        if (file4_SubMethod == "Build_2X_Enzyme_2")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          PCR_SET_UP_NIMBUS_V6::Build_2X_Enzyme_2(NimbusChannel, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_Disp_cLLD_On, para_PreAliq_Disp_Submerge_Depth, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file2_Asp_position_2nd, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, Random_Access, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, file4_Disp_position, file1_SimOn, file4_Step_Name, file4_Tip_Sequence, PCR_Remain_PRODUCT_001_1st_Tube, PCR_Remain_PRODUCT_002_1st_Tube, PCR_Remain_PRODUCT_003_1st_Tube, PCR_Remain_PRODUCT_004_1st_Tube, file2_Set_No, file4_No, file3_2X_Enzyme_Height, file2_Plate);
        }
        if (file4_SubMethod == "Build_MM_1")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          PCR_SET_UP_NIMBUS_V6::Build_MM_1(NimbusChannel, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_Disp_cLLD_On, para_PreAliq_Disp_Submerge_Depth, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file2_Asp_position_2nd, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, Random_Access, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, file4_Disp_position, file1_SimOn, file4_Step_Name, file4_Tip_Sequence, PCR_Remain_PRODUCT_001, PCR_Remain_PRODUCT_002, PCR_Remain_PRODUCT_003, PCR_Remain_PRODUCT_004, file2_Set_No, file4_No, file2_Plate, file2_2X_Enzyme_Height, file3_2X_Enzyme_Height);
        }
        if (file4_SubMethod == "Build_MM_2")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          PCR_SET_UP_NIMBUS_V6::Build_MM_2(NimbusChannel, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Disp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_Disp_cLLD_On, para_PreAliq_Disp_Submerge_Depth, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file2_Asp_position_2nd, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, Random_Access, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, file4_Disp_position, file1_SimOn, file4_Step_Name, file4_Tip_Sequence, PCR_Remain_PRODUCT_001_1st_Tube, PCR_Remain_PRODUCT_002_1st_Tube, PCR_Remain_PRODUCT_003_1st_Tube, PCR_Remain_PRODUCT_004_1st_Tube, file2_Set_No, file4_No, file2_Plate, file2_2X_Enzyme_Height, file3_2X_Enzyme_Height);
        }
        if (file4_SubMethod == "Distribute_MM_1")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          if (file1_SimOn == 0)
          {
            if (STEP == 2)
            {
              if (Product_Name == "RV16")
              {
                HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
              }
            }
          }
          PCR_SET_UP_NIMBUS_V6::Distribute_MM_1(NimbusChannel, Sample_Cnt, para_Asp_cLLD_On, para_Asp_Submerge_Depth, para_Asp_position, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_ASD, para_Disp_position, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Liquid_Class, para_Tips, para_Volume, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file2_PC_No, file2_WTC_No, file2_NC_No, file4_Disp_position, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, file2_PC_No, file7_PC_No, file9_PC_No, file11_PC_No, file2_WTC_No, file7_WTC_No, file9_WTC_No, file11_WTC_No, file2_NC_No, file7_NC_No, file9_NC_No, file11_NC_No, file2_SD_No, file7_SD_No, file9_SD_No, file11_SD_No, para_Disp_Submerge_Depth, para_PreAliq_Disp_Submerge_Depth, Random_Access, Translate("0000"), SeqGetTotal_para_Disp_position, file2_Set_No, file4_Tip_Sequence, file2_Plate);
          if (file1_SimOn == 0)
          {
            if (STEP == 2)
            {
              if (Product_Name == "RV16")
              {
                HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
              }
            }
          }
        }
        if (file4_SubMethod == "Distribute_MM_2")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          if (file1_SimOn == 0)
          {
            if (STEP == 2)
            {
              if (Product_Name == "RV16")
              {
                HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
              }
            }
          }
          PCR_SET_UP_NIMBUS_V6::Distribute_MM_2(NimbusChannel, Sample_Cnt, para_Asp_cLLD_On, para_Asp_Submerge_Depth, para_Asp_position, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_ASD, para_Disp_position, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Liquid_Class, para_Tips, para_Volume, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file2_PC_No, file2_WTC_No, file2_NC_No, file4_Disp_position, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, file2_PC_No, file7_PC_No, file9_PC_No, file11_PC_No, file2_WTC_No, file7_WTC_No, file9_WTC_No, file11_WTC_No, file2_NC_No, file7_NC_No, file9_NC_No, file11_NC_No, file2_SD_No, file7_SD_No, file9_SD_No, file11_SD_No, para_Disp_Submerge_Depth, para_PreAliq_Disp_Submerge_Depth, Random_Access, Translate("0000"), SeqGetTotal_para_Disp_position, file2_Set_No, file4_Tip_Sequence, file2_Product_No, file2_Plate);
          if (file1_SimOn == 0)
          {
            if (STEP == 2)
            {
              if (Product_Name == "RV16")
              {
                HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
              }
            }
          }
        }
        if (file4_SubMethod == "Transfer_NC")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          if (file1_SimOn == 0)
          {
            if (STEP == 2)
            {
              if (Product_Name == "RV16")
              {
                HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
              }
            }
          }
          PCR_SET_UP_NIMBUS_V6::Transfer_NC(NimbusChannel, Sample_Cnt, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_Disp_cLLD_On, para_PreAliq_Disp_Submerge_Depth, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, SeqGetTotal_NC, Random_Access, file4_Tip_Sequence);
          if (file1_SimOn == 0)
          {
            if (STEP == 2)
            {
              if (Product_Name == "RV16")
              {
                HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
              }
            }
          }
        }
        if (file4_SubMethod == "Transfer_Sample")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          if (file1_SimOn == 0)
          {
            if (STEP == 2)
            {
              if (Product_Name == "RV16")
              {
                HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
              }
              if (file2_Tube == "TUBE_020")
              {
                HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
              }
              if (file2_Tube == "TUBE_021")
              {
                HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
              }
              if (file2_Tube == "TUBE_022")
              {
                HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
              }
            }
            if (STEP == 4)
            {
              if (file2_Plate == "PLATE_012")
              {
                HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
              }
              if (file2_Plate == "PLATE_013")
              {
                HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
              }
            }
            if (STEP == 8)
            {
              HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
            }
            if (STEP == 10)
            {
              HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
            }
          }
          if (file4_Disp_position == 16)
          {
            EXTRACTION_NIMBUS_V6::Set_ChannelPattern(Sample_Cnt_PRODUCT_001, ChPattern_Chk, ChPattern_Remain, ChPattern_Remain2);
          }
          if (file4_Disp_position == 17)
          {
            EXTRACTION_NIMBUS_V6::Set_ChannelPattern(Sample_Cnt_PRODUCT_002, ChPattern_Chk, ChPattern_Remain, ChPattern_Remain2);
          }
          if (file4_Disp_position == 18)
          {
            EXTRACTION_NIMBUS_V6::Set_ChannelPattern(Sample_Cnt_PRODUCT_003, ChPattern_Chk, ChPattern_Remain, ChPattern_Remain2);
          }
          if (file4_Disp_position == 21)
          {
            EXTRACTION_NIMBUS_V6::Set_ChannelPattern(Sample_Cnt_PRODUCT_004, ChPattern_Chk, ChPattern_Remain, ChPattern_Remain2);
          }
          if (file4_Disp_position == 406)
          {
            EXTRACTION_NIMBUS_V6::Set_ChannelPattern(Sample_Cnt_PRODUCT_001, ChPattern_Chk, ChPattern_Remain, ChPattern_Remain2);
          }
          PCR_SET_UP_NIMBUS_V6::Transfer_Sample(NimbusChannel, Sample_Cnt, para_Asp_cLLD_On, para_Asp_position, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Disp_position, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Liquid_Class, para_Tips, para_Volume, file2_Set_No, ChPattern_Chk, ChPattern_Remain, ChPattern_Remain2, file4_Disp_position, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Random_Access, file4_Tip_Sequence, file2_Set_No, file2_Product_No, file2_Rack, file2_Step, file2_Plate);
          if (file1_SimOn == 0)
          {
            if (STEP == 2)
            {
              if (Product_Name == "RV16")
              {
                HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
              }
              if (file2_Tube == "TUBE_020")
              {
                HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
              }
              if (file2_Tube == "TUBE_021")
              {
                HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
              }
              if (file2_Tube == "TUBE_022")
              {
                HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
              }
            }
            if (STEP == 4)
            {
              if (file2_Plate == "PLATE_012")
              {
                HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
              }
              if (file2_Plate == "PLATE_013")
              {
                HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
              }
            }
            if (STEP == 8)
            {
              HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
            }
            if (STEP == 10)
            {
              HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
            }
          }
        }
        if (file4_SubMethod == "Transfer_PC")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          PCR_SET_UP_NIMBUS_V6::Transfer_PC(NimbusChannel, Sample_Cnt, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_Disp_cLLD_On, para_PreAliq_Disp_Submerge_Depth, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, file4_PreAliq_Volume, Random_Access, file4_Tip_Sequence, file4_No, file4_Step_Name, file2_PPC_No, file7_PPC_No, file9_PPC_No, file11_PPC_No, file2_Product_Name, file7_Product_Name, file9_Product_Name, file11_Product_Name);
        }
        if (file4_SubMethod == "Unlock_Door")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Unlock_Door();
        }
        Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
        Trace ("+++++++++++++++ ", file4_Step_Name, " - Submethod Complete +++++++++++++++");
        Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
        if (file4_Tip_Sequence == 1)
        {
          SeqCopySequence(NimbusChannel.All_1000ul_Tips, para_Tips);
        }
        if (file4_Tip_Sequence == 3)
        {
          SeqCopySequence(NimbusChannel.All_300ul_Tips, para_Tips);
        }
      }
    }
    if( 0 != file4.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file4.RemoveFields();
    MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++\n+++++++++++++++++++++++ Method Complete ++++++++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    if (Use_All_Tips > 0)
    {
      TipCount1::Write2(NimbusChannel.All_1000ul_Tips, Translate("All_Tips_Counter"), NimbusChannel);
    }
    if (Use_300ul_Tips > 0)
    {
      TipCount1::Write2(NimbusChannel.All_300ul_Tips, Translate("All_300ul_Tips_Counter"), NimbusChannel);
    }
    if (STEP <= 3)
    {
      if (STEP != 2)
      {
        EXTRACTION_NIMBUS_V6::Stop_Temp_HHS1(file1_SimOn, HHS1);
      }
    }
    {
      	NimbusChannel._3A356192_E4CF_40AA_B9D6_8B00717D034D("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"); // Initialize
    }
    {
      	NimbusChannel._DED83B4B_588B_45A9_B86F_0F12C4EF600A("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"); // MoveAbsolute
    }
    if (file2_Clot == 1)
    {
      if (Clot_Occurs == 1)
      {
        if (STEP == 7)
        {
          dialogHandle_56.SetOutput(Translate("Clot was detected or liquid was not correctly aspirated."), "\n", Translate("Click OK, and then check the location of the samples indicated on the pop-up screen."));
          if( 0 == dialogHandle_56.PlaySound("C:\\Seegene_Method_Setting\\Clot Error Alarm.wav") )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          dialogHandle_56.ShowOutput(Translate("Clot Detected or Liquid Not Correctly Aspirated"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          if( 0 == dialogHandle_56.PlaySound("") )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        if (STEP == 9)
        {
          dialogHandle_93.SetOutput(Translate("Clot was detected or liquid was not correctly aspirated."), "\n", Translate("Click OK, and then check the location of the samples indicated on the pop-up screen."));
          if( 0 == dialogHandle_93.PlaySound("C:\\Seegene_Method_Setting\\Clot Error Alarm.wav") )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          dialogHandle_93.ShowOutput(Translate("Clot Detected or Liquid Not Correctly Aspirated"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          if( 0 == dialogHandle_93.PlaySound("") )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
    }
    dialogHandle_2.SetOutput(Translate("Complete"));
    if( 0 == dialogHandle_2.PlaySound("C:\\Seegene_Method_Setting\\REMINDER.WAV") )
    {
          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    dialogHandle_2.ShowOutput(Translate("Complete"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    if( 0 == dialogHandle_2.PlaySound("") )
    {
          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    EXTRACTION_NIMBUS_V6::_ExitLibrary();
    PCR_SET_UP_NIMBUS_V6::_ExitLibrary();
  } }
