#pragma once
#include "HSLMlStarStepReturnLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace CALCULATEVOLUMES {
  function CheckVolume_1mL( device & ML_STAR, sequence SeqToCheck, variable ContainersConnected, variable ChannelUsed, variable MinimumRequired, variable & MeetsRequirement, variable & MeasuredVolume ) void ;
  function CheckVolume_5mL( device & ML_STAR, sequence & SeqToCheck, variable ContainersConnected, variable ChannelUsed, variable MinimumRequired, variable & MeetsRequirement, variable & MeasuredVolume ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function CheckVolume_5mL( device & ML_STAR, sequence & SeqToCheck, variable ContainersConnected, variable ChannelUsed, variable MinimumRequired, variable & MeetsRequirement, variable & MeasuredVolume ) void {
    private variable PositionID;
    private variable LLD_Data_Channel_Height;
    private variable LLD_Data_Channel;
    private variable LabwareID;
    private variable LLD_Result_String;
    MeetsRequirement = 0;
    MeasuredVolume = 0;
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR.XLGetLastLiquidLevel("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");
      	LLD_Result_String = arrRetValues[2];
    }
    LLD_Data_Channel = StepReturn::GetStepData(ChannelUsed, LLD_Result_String);
    LLD_Data_Channel_Height = StrFVal(LLD_Data_Channel);
    LabwareID = SeqGetLabwareId(SeqToCheck);
    PositionID = SeqGetPositionId(SeqToCheck);
    MeasuredVolume = DevComputeContainerVolume2(ML_STAR, LabwareID, PositionID, LLD_Data_Channel_Height, 1, 1);
    Trace ("********** Volume found is:  ", MeasuredVolume, "mL");
    if (MeasuredVolume >= MinimumRequired)
    {
      MeetsRequirement = 0;
    }
    else
    {
      MeetsRequirement = -1;
    }
  }

  function CheckVolume_1mL( device & ML_STAR, sequence SeqToCheck, variable ContainersConnected, variable ChannelUsed, variable MinimumRequired, variable & MeetsRequirement, variable & MeasuredVolume ) void {
    private variable LLD_Data_Channel_Height;
    private variable LLD_Data_Channel;
    private variable Position_ID;
    private variable Labware_ID;
    private variable LLD_Result_String;
    MeetsRequirement = 0;
    MeasuredVolume = 0;
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR.GetLastLiquidLevel("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");
      	LLD_Result_String = arrRetValues[2];
    }
    LLD_Data_Channel = StepReturn::GetStepData(ChannelUsed, LLD_Result_String);
    LLD_Data_Channel_Height = StrFVal(LLD_Data_Channel);
    Labware_ID = SeqGetLabwareId(SeqToCheck);
    Position_ID = SeqGetPositionId(SeqToCheck);
    MeasuredVolume = DevComputeContainerVolume2(ML_STAR, Labware_ID, Position_ID, LLD_Data_Channel_Height, 1, 1);
    if(0){
      Trace ("********** Volume found is:  ", MeasuredVolume, "mL");
    }
    if (MeasuredVolume >= MinimumRequired)
    {
      MeetsRequirement = 0;
    }
    else
    {
      MeetsRequirement = -1;
    }
  }
} // library namespace
