#pragma once
#include "HSLErrLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace ERRORCHANNELSELECTION_V1 {
  function ErrorChannelSelection( variable Instrument, variable & ChannelSelection_ClotDetected, variable & ChannelSelection_LiquidNotCorrectlyAspirated, variable & ChannelSelection_NotEnoughLiquidPresent, variable & ChannelSelection_NoLiquidLevelFound, variable & ChannelSelection_UnexpectedcLLDfound, variable & ChannelSelection_AllError, variable & ChannelSelection_AllError2, variable & ChannelSelection_NotError, variable & ChannelSelection_AllCh, variable & ChannelSelection_decapError ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function ErrorChannelSelection( variable Instrument, variable & ChannelSelection_ClotDetected, variable & ChannelSelection_LiquidNotCorrectlyAspirated, variable & ChannelSelection_NotEnoughLiquidPresent, variable & ChannelSelection_NoLiquidLevelFound, variable & ChannelSelection_UnexpectedcLLDfound, variable & ChannelSelection_AllError, variable & ChannelSelection_AllError2, variable & ChannelSelection_NotError, variable & ChannelSelection_AllCh, variable & ChannelSelection_decapError ) void {
    private variable varErrDescrip;
    private variable loopCounter1;
    private variable Error_Occured;
    private variable Ch1;
    private variable Ch2;
    private variable Ch3;
    private variable Ch4;
    private variable Error_Channel;
    private variable Length_ChannelSelection;
    private variable loopCounter2;
    private variable ChannelSelection;
    private variable Ch6;
    private variable Ch7;
    private variable Ch8;
    private variable Ch5;
    private variable ChannelSelection_StepLostZdrive;
    ChannelSelection_ClotDetected = 0;
    ChannelSelection_LiquidNotCorrectlyAspirated = 0;
    ChannelSelection_NotEnoughLiquidPresent = 0;
    ChannelSelection_NoLiquidLevelFound = 0;
    ChannelSelection_UnexpectedcLLDfound = 0;
    ChannelSelection_AllError = 0;
    ChannelSelection_AllError2 = 0;
    ChannelSelection_AllCh = 0;
    if (Instrument == 1)
    {
      MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++\nGet Error Description from instrument (included which channels have error)\n+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++\n[Error Message]"));
      varErrDescrip = ErrGetDescription();
      Trace (varErrDescrip);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
      {
        for(loopCounter1 = 0; loopCounter1 < 5;)
        {
          loopCounter1 = loopCounter1 + 1;
          Ch1 = Translate("0");
          Ch2 = Translate("0");
          Ch3 = Translate("0");
          Ch4 = Translate("0");
          if (loopCounter1 == 1)
          {
            Error_Occured = StrFind(varErrDescrip, Translate("Clot Detected"));
            if (Error_Occured != -1)
            {
              Error_Channel = StrFind(varErrDescrip, Translate("Channel1:IHoiBzCanChannel,Aspirate,Clot Detected"));
              if (Error_Channel != -1)
              {
                Ch1 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel2:IHoiBzCanChannel,Aspirate,Clot Detected"));
              if (Error_Channel != -1)
              {
                Ch2 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel3:IHoiBzCanChannel,Aspirate,Clot Detected"));
              if (Error_Channel != -1)
              {
                Ch3 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel4:IHoiBzCanChannel,Aspirate,Clot Detected"));
              if (Error_Channel != -1)
              {
                Ch4 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel1:IHoiBzCanChannel,AspirateCapacitiveLld,Clot Detected"));
              if (Error_Channel != -1)
              {
                Ch1 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel2:IHoiBzCanChannel,AspirateCapacitiveLld,Clot Detected"));
              if (Error_Channel != -1)
              {
                Ch2 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel3:IHoiBzCanChannel,AspirateCapacitiveLld,Clot Detected"));
              if (Error_Channel != -1)
              {
                Ch3 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel4:IHoiBzCanChannel,AspirateCapacitiveLld,Clot Detected"));
              if (Error_Channel != -1)
              {
                Ch4 = Translate("1");
              }
            }
            ChannelSelection_ClotDetected = StrConcat4(Ch1, Ch2, Ch3, Ch4);
          }
          if (loopCounter1 == 2)
          {
            Error_Occured = StrFind(varErrDescrip, Translate("Unexpected CLLD Detected"));
            if (Error_Occured != -1)
            {
              Error_Channel = StrFind(varErrDescrip, Translate("Channel1:IHoiBzCanChannel,Aspirate,Unexpected CLLD Detected"));
              if (Error_Channel != -1)
              {
                Ch1 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel2:IHoiBzCanChannel,Aspirate,Unexpected CLLD Detected"));
              if (Error_Channel != -1)
              {
                Ch2 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel3:IHoiBzCanChannel,Aspirate,Unexpected CLLD Detected"));
              if (Error_Channel != -1)
              {
                Ch3 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel4:IHoiBzCanChannel,Aspirate,Unexpected CLLD Detected"));
              if (Error_Channel != -1)
              {
                Ch4 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel1:IHoiBzCanChannel,AspirateCapacitiveLld,Unexpected CLLD Detected"));
              if (Error_Channel != -1)
              {
                Ch1 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel2:IHoiBzCanChannel,AspirateCapacitiveLld,Unexpected CLLD Detected"));
              if (Error_Channel != -1)
              {
                Ch2 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel3:IHoiBzCanChannel,AspirateCapacitiveLld,Unexpected CLLD Detected"));
              if (Error_Channel != -1)
              {
                Ch3 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel4:IHoiBzCanChannel,AspirateCapacitiveLld,Unexpected CLLD Detected"));
              if (Error_Channel != -1)
              {
                Ch4 = Translate("1");
              }
            }
            ChannelSelection_UnexpectedcLLDfound = StrConcat4(Ch1, Ch2, Ch3, Ch4);
          }
          if (loopCounter1 == 3)
          {
            Error_Occured = StrFind(varErrDescrip, Translate("Liquid Not Correctly Aspirated"));
            if (Error_Occured != -1)
            {
              Error_Channel = StrFind(varErrDescrip, Translate("Channel1:IHoiBzCanChannel,Aspirate,Liquid Not Correctly Aspirated"));
              if (Error_Channel != -1)
              {
                Ch1 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel2:IHoiBzCanChannel,Aspirate,Liquid Not Correctly Aspirated"));
              if (Error_Channel != -1)
              {
                Ch2 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel3:IHoiBzCanChannel,Aspirate,Liquid Not Correctly Aspirated"));
              if (Error_Channel != -1)
              {
                Ch3 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel4:IHoiBzCanChannel,Aspirate,Liquid Not Correctly Aspirated"));
              if (Error_Channel != -1)
              {
                Ch4 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel1:IHoiBzCanChannel,AspirateCapacitiveLld,Liquid Not Correctly Aspirated"));
              if (Error_Channel != -1)
              {
                Ch1 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel2:IHoiBzCanChannel,AspirateCapacitiveLld,Liquid Not Correctly Aspirated"));
              if (Error_Channel != -1)
              {
                Ch2 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel3:IHoiBzCanChannel,AspirateCapacitiveLld,Liquid Not Correctly Aspirated"));
              if (Error_Channel != -1)
              {
                Ch3 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel4:IHoiBzCanChannel,AspirateCapacitiveLld,Liquid Not Correctly Aspirated"));
              if (Error_Channel != -1)
              {
                Ch4 = Translate("1");
              }
            }
            ChannelSelection_LiquidNotCorrectlyAspirated = StrConcat4(Ch1, Ch2, Ch3, Ch4);
          }
          if (loopCounter1 == 4)
          {
            Error_Occured = StrFind(varErrDescrip, Translate("No Liquid Level Found"));
            if (Error_Occured != -1)
            {
              Error_Channel = StrFind(varErrDescrip, Translate("Channel1:IHoiBzCanChannel,Aspirate,No Liquid Level Found"));
              if (Error_Channel != -1)
              {
                Ch1 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel2:IHoiBzCanChannel,Aspirate,No Liquid Level Found"));
              if (Error_Channel != -1)
              {
                Ch2 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel3:IHoiBzCanChannel,Aspirate,No Liquid Level Found"));
              if (Error_Channel != -1)
              {
                Ch3 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel4:IHoiBzCanChannel,Aspirate,No Liquid Level Found"));
              if (Error_Channel != -1)
              {
                Ch4 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel1:IHoiBzCanChannel,AspirateCapacitiveLld,No Liquid Level Found"));
              if (Error_Channel != -1)
              {
                Ch1 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel2:IHoiBzCanChannel,AspirateCapacitiveLld,No Liquid Level Found"));
              if (Error_Channel != -1)
              {
                Ch2 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel3:IHoiBzCanChannel,AspirateCapacitiveLld,No Liquid Level Found"));
              if (Error_Channel != -1)
              {
                Ch3 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel4:IHoiBzCanChannel,AspirateCapacitiveLld,No Liquid Level Found"));
              if (Error_Channel != -1)
              {
                Ch4 = Translate("1");
              }
            }
            ChannelSelection_NoLiquidLevelFound = StrConcat4(Ch1, Ch2, Ch3, Ch4);
          }
          if (loopCounter1 == 5)
          {
            Error_Occured = StrFind(varErrDescrip, Translate("Not Enough Liquid Present"));
            if (Error_Occured != -1)
            {
              Error_Channel = StrFind(varErrDescrip, Translate("Channel1:IHoiBzCanChannel,Aspirate,Not Enough Liquid Present"));
              if (Error_Channel != -1)
              {
                Ch1 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel2:IHoiBzCanChannel,Aspirate,Not Enough Liquid Present"));
              if (Error_Channel != -1)
              {
                Ch2 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel3:IHoiBzCanChannel,Aspirate,Not Enough Liquid Present"));
              if (Error_Channel != -1)
              {
                Ch3 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel4:IHoiBzCanChannel,Aspirate,Not Enough Liquid Present"));
              if (Error_Channel != -1)
              {
                Ch4 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel1:IHoiBzCanChannel,AspirateCapacitiveLld,Not Enough Liquid Present"));
              if (Error_Channel != -1)
              {
                Ch1 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel2:IHoiBzCanChannel,AspirateCapacitiveLld,Not Enough Liquid Present"));
              if (Error_Channel != -1)
              {
                Ch2 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel3:IHoiBzCanChannel,AspirateCapacitiveLld,Not Enough Liquid Present"));
              if (Error_Channel != -1)
              {
                Ch3 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("Channel4:IHoiBzCanChannel,AspirateCapacitiveLld,Not Enough Liquid Present"));
              if (Error_Channel != -1)
              {
                Ch4 = Translate("1");
              }
            }
            ChannelSelection_NotEnoughLiquidPresent = StrConcat4(Ch1, Ch2, Ch3, Ch4);
          }
        }
      }
      ChannelSelection_ClotDetected = StrFVal(ChannelSelection_ClotDetected);
      ChannelSelection_UnexpectedcLLDfound = StrFVal(ChannelSelection_UnexpectedcLLDfound);
      ChannelSelection_LiquidNotCorrectlyAspirated = StrFVal(ChannelSelection_LiquidNotCorrectlyAspirated);
      ChannelSelection_NoLiquidLevelFound = StrFVal(ChannelSelection_NoLiquidLevelFound);
      ChannelSelection_NotEnoughLiquidPresent = StrFVal(ChannelSelection_NotEnoughLiquidPresent);
      ChannelSelection_NotError = StrFVal(ChannelSelection_NotError);
      ChannelSelection_ClotDetected = MthCeiling(ChannelSelection_ClotDetected);
      ChannelSelection_UnexpectedcLLDfound = MthCeiling(ChannelSelection_UnexpectedcLLDfound);
      ChannelSelection_LiquidNotCorrectlyAspirated = MthCeiling(ChannelSelection_LiquidNotCorrectlyAspirated);
      ChannelSelection_NoLiquidLevelFound = MthCeiling(ChannelSelection_NoLiquidLevelFound);
      ChannelSelection_NotEnoughLiquidPresent = MthCeiling(ChannelSelection_NotEnoughLiquidPresent);
      ChannelSelection_NotError = MthCeiling(ChannelSelection_NotError);
      ChannelSelection_AllError = ChannelSelection_ClotDetected + ChannelSelection_LiquidNotCorrectlyAspirated;
      ChannelSelection_AllError = ChannelSelection_AllError + ChannelSelection_NoLiquidLevelFound;
      ChannelSelection_AllError = ChannelSelection_AllError + ChannelSelection_NotEnoughLiquidPresent;
      ChannelSelection_AllError = ChannelSelection_AllError + ChannelSelection_UnexpectedcLLDfound;
      ChannelSelection_NotError = ChannelSelection_NotError - ChannelSelection_AllError;
      ChannelSelection_AllError2 = ChannelSelection_AllError - ChannelSelection_NoLiquidLevelFound;
      ChannelSelection_AllError2 = ChannelSelection_AllError2 - ChannelSelection_NotEnoughLiquidPresent;
      ChannelSelection_AllError2 = ChannelSelection_AllError2 - ChannelSelection_UnexpectedcLLDfound;
      ChannelSelection_AllCh = ChannelSelection_AllError + ChannelSelection_NotError;
      ChannelSelection_NotError = Util2::ToString(ChannelSelection_NotError);
      ChannelSelection_ClotDetected = Util2::ToString(ChannelSelection_ClotDetected);
      ChannelSelection_UnexpectedcLLDfound = Util2::ToString(ChannelSelection_UnexpectedcLLDfound);
      ChannelSelection_LiquidNotCorrectlyAspirated = Util2::ToString(ChannelSelection_LiquidNotCorrectlyAspirated);
      ChannelSelection_NoLiquidLevelFound = Util2::ToString(ChannelSelection_NoLiquidLevelFound);
      ChannelSelection_NotEnoughLiquidPresent = Util2::ToString(ChannelSelection_NotEnoughLiquidPresent);
      ChannelSelection_AllError = Util2::ToString(ChannelSelection_AllError);
      ChannelSelection_AllError2 = Util2::ToString(ChannelSelection_AllError2);
      ChannelSelection_AllCh = Util2::ToString(ChannelSelection_AllCh);
      {
        for(loopCounter2 = 0; loopCounter2 < 9;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (loopCounter2 == 1)
          {
            ChannelSelection = ChannelSelection_AllError;
          }
          if (loopCounter2 == 2)
          {
            ChannelSelection = ChannelSelection_ClotDetected;
          }
          if (loopCounter2 == 3)
          {
            ChannelSelection = ChannelSelection_LiquidNotCorrectlyAspirated;
          }
          if (loopCounter2 == 4)
          {
            ChannelSelection = ChannelSelection_NotError;
          }
          if (loopCounter2 == 5)
          {
            ChannelSelection = ChannelSelection_NoLiquidLevelFound;
          }
          if (loopCounter2 == 6)
          {
            ChannelSelection = ChannelSelection_NotEnoughLiquidPresent;
          }
          if (loopCounter2 == 7)
          {
            ChannelSelection = ChannelSelection_UnexpectedcLLDfound;
          }
          if (loopCounter2 == 8)
          {
            ChannelSelection = ChannelSelection_AllError2;
          }
          if (loopCounter2 == 9)
          {
            ChannelSelection = ChannelSelection_AllCh;
          }
          Length_ChannelSelection = StrGetLength(ChannelSelection);
          if (Length_ChannelSelection == 1)
          {
            ChannelSelection = StrConcat2(Translate("000"), ChannelSelection);
          }
          if (Length_ChannelSelection == 2)
          {
            ChannelSelection = StrConcat2(Translate("00"), ChannelSelection);
          }
          if (Length_ChannelSelection == 3)
          {
            ChannelSelection = StrConcat2(Translate("0"), ChannelSelection);
          }
          if (loopCounter2 == 1)
          {
            ChannelSelection_AllError = ChannelSelection;
          }
          if (loopCounter2 == 2)
          {
            ChannelSelection_ClotDetected = ChannelSelection;
          }
          if (loopCounter2 == 3)
          {
            ChannelSelection_LiquidNotCorrectlyAspirated = ChannelSelection;
          }
          if (loopCounter2 == 4)
          {
            ChannelSelection_NotError = ChannelSelection;
          }
          if (loopCounter2 == 5)
          {
            ChannelSelection_NoLiquidLevelFound = ChannelSelection;
          }
          if (loopCounter2 == 6)
          {
            ChannelSelection_NotEnoughLiquidPresent = ChannelSelection;
          }
          if (loopCounter2 == 7)
          {
            ChannelSelection_UnexpectedcLLDfound = ChannelSelection;
          }
          if (loopCounter2 == 8)
          {
            ChannelSelection_AllError2 = ChannelSelection;
          }
          if (loopCounter2 == 9)
          {
            ChannelSelection_AllCh = ChannelSelection;
          }
        }
      }
      Trace ("ChannelSelection_ClotDetected = ", ChannelSelection_ClotDetected);
      Trace ("ChannelSelection_UnexpectedcLLDfound = ", ChannelSelection_UnexpectedcLLDfound);
      Trace ("ChannelSelection_LiquidNotCorrectlyAspirated = ", ChannelSelection_LiquidNotCorrectlyAspirated);
      Trace ("ChannelSelection_NoLiquidLevelFound = ", ChannelSelection_NoLiquidLevelFound);
      Trace ("ChannelSelection_NotEnoughLiquidPresent = ", ChannelSelection_NotEnoughLiquidPresent);
      Trace ("ChannelSelection_AllError = ", ChannelSelection_AllError);
      Trace ("ChannelSelection_AllError2 = ", ChannelSelection_AllError2);
      Trace ("ChannelSelection_NotError = ", ChannelSelection_NotError);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Instrument == 2)
    {
      MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++\nGet Error Description from instrument (included which channels have error)\n+++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++\n[Error Message]"));
      varErrDescrip = ErrGetDescription();
      Trace (varErrDescrip);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
      {
        for(loopCounter1 = 0; loopCounter1 < 6;)
        {
          loopCounter1 = loopCounter1 + 1;
          Ch1 = Translate("0");
          Ch2 = Translate("0");
          Ch3 = Translate("0");
          Ch4 = Translate("0");
          Ch5 = Translate("0");
          Ch6 = Translate("0");
          Ch7 = Translate("0");
          Ch8 = Translate("0");
          if (loopCounter1 == 1)
          {
            Error_Occured = StrFind(varErrDescrip, Translate("Clot"));
            if (Error_Occured != -1)
            {
              Error_Channel = StrFind(varErrDescrip, Translate("[P1: Liquid handling, Clot detected"));
              if (Error_Channel != -1)
              {
                Ch1 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P2: Liquid handling, Clot detected"));
              if (Error_Channel != -1)
              {
                Ch2 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P3: Liquid handling, Clot detected"));
              if (Error_Channel != -1)
              {
                Ch3 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P4: Liquid handling, Clot detected"));
              if (Error_Channel != -1)
              {
                Ch4 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P5: Liquid handling, Clot detected"));
              if (Error_Channel != -1)
              {
                Ch5 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P6: Liquid handling, Clot detected"));
              if (Error_Channel != -1)
              {
                Ch6 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P7: Liquid handling, Clot detected"));
              if (Error_Channel != -1)
              {
                Ch7 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P8: Liquid handling, Clot detected"));
              if (Error_Channel != -1)
              {
                Ch8 = Translate("1");
              }
            }
            ChannelSelection_ClotDetected = StrConcat8(Ch1, Ch2, Ch3, Ch4, Ch5, Ch6, Ch7, Ch8);
          }
          if (loopCounter1 == 2)
          {
            Error_Occured = StrFind(varErrDescrip, Translate("correctly"));
            if (Error_Occured != -1)
            {
              Error_Channel = StrFind(varErrDescrip, Translate("[P1: Liquid handling, Liquid not correctly"));
              if (Error_Channel != -1)
              {
                Ch1 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P2: Liquid handling, Liquid not correctly"));
              if (Error_Channel != -1)
              {
                Ch2 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P3: Liquid handling, Liquid not correctly"));
              if (Error_Channel != -1)
              {
                Ch3 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P4: Liquid handling, Liquid not correctly"));
              if (Error_Channel != -1)
              {
                Ch4 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P5: Liquid handling, Liquid not correctly"));
              if (Error_Channel != -1)
              {
                Ch5 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P6: Liquid handling, Liquid not correctly"));
              if (Error_Channel != -1)
              {
                Ch6 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P7: Liquid handling, Liquid not correctly"));
              if (Error_Channel != -1)
              {
                Ch7 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P8: Liquid handling, Liquid not correctly"));
              if (Error_Channel != -1)
              {
                Ch8 = Translate("1");
              }
            }
            ChannelSelection_LiquidNotCorrectlyAspirated = StrConcat8(Ch1, Ch2, Ch3, Ch4, Ch5, Ch6, Ch7, Ch8);
          }
          if (loopCounter1 == 3)
          {
            Error_Occured = StrFind(varErrDescrip, Translate("Not enough liquid"));
            if (Error_Occured != -1)
            {
              Error_Channel = StrFind(varErrDescrip, Translate("[P1: Level detection, Not enough liquid"));
              if (Error_Channel != -1)
              {
                Ch1 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P2: Level detection, Not enough liquid"));
              if (Error_Channel != -1)
              {
                Ch2 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P3: Level detection, Not enough liquid"));
              if (Error_Channel != -1)
              {
                Ch3 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P4: Level detection, Not enough liquid"));
              if (Error_Channel != -1)
              {
                Ch4 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P5: Level detection, Not enough liquid"));
              if (Error_Channel != -1)
              {
                Ch5 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P6: Level detection, Not enough liquid"));
              if (Error_Channel != -1)
              {
                Ch6 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P7: Level detection, Not enough liquid"));
              if (Error_Channel != -1)
              {
                Ch7 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P8: Level detection, Not enough liquid"));
              if (Error_Channel != -1)
              {
                Ch8 = Translate("1");
              }
            }
            ChannelSelection_NotEnoughLiquidPresent = StrConcat8(Ch1, Ch2, Ch3, Ch4, Ch5, Ch6, Ch7, Ch8);
          }
          if (loopCounter1 == 4)
          {
            Error_Occured = StrFind(varErrDescrip, Translate("Unexpected"));
            if (Error_Occured != -1)
            {
              Error_Channel = StrFind(varErrDescrip, Translate("[P1: Level detection, Unexpected liquid level found"));
              if (Error_Channel != -1)
              {
                Ch1 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P2: Level detection, Unexpected liquid level found"));
              if (Error_Channel != -1)
              {
                Ch2 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P3: Level detection, Unexpected liquid level found"));
              if (Error_Channel != -1)
              {
                Ch3 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P4: Level detection, Unexpected liquid level found"));
              if (Error_Channel != -1)
              {
                Ch4 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P5: Level detection, Unexpected liquid level found"));
              if (Error_Channel != -1)
              {
                Ch5 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P6: Level detection, Unexpected liquid level found"));
              if (Error_Channel != -1)
              {
                Ch6 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P7: Level detection, Unexpected liquid level found"));
              if (Error_Channel != -1)
              {
                Ch7 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P8: Level detection, Unexpected liquid level found"));
              if (Error_Channel != -1)
              {
                Ch8 = Translate("1");
              }
            }
            ChannelSelection_UnexpectedcLLDfound = StrConcat8(Ch1, Ch2, Ch3, Ch4, Ch5, Ch6, Ch7, Ch8);
          }
          if (loopCounter1 == 5)
          {
            Error_Occured = StrFind(varErrDescrip, Translate("Step lost"));
            if (Error_Occured != -1)
            {
              Error_Channel = StrFind(varErrDescrip, Translate("[P1: Z drive, Step lost on Z drive"));
              if (Error_Channel != -1)
              {
                Ch1 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P2: Z drive, Step lost on Z drive"));
              if (Error_Channel != -1)
              {
                Ch2 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P3: Z drive, Step lost on Z drive"));
              if (Error_Channel != -1)
              {
                Ch3 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P4: Z drive, Step lost on Z drive"));
              if (Error_Channel != -1)
              {
                Ch4 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P5: Z drive, Step lost on Z drive"));
              if (Error_Channel != -1)
              {
                Ch5 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P6: Z drive, Step lost on Z drive"));
              if (Error_Channel != -1)
              {
                Ch6 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P7: Z drive, Step lost on Z drive"));
              if (Error_Channel != -1)
              {
                Ch7 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P8: Z drive, Step lost on Z drive"));
              if (Error_Channel != -1)
              {
                Ch8 = Translate("1");
              }
            }
            ChannelSelection_StepLostZdrive = StrConcat8(Ch1, Ch2, Ch3, Ch4, Ch5, Ch6, Ch7, Ch8);
          }
          if (loopCounter1 == 6)
          {
            Error_Occured = StrFind(varErrDescrip, Translate("Liquid level not found"));
            if (Error_Occured != -1)
            {
              Error_Channel = StrFind(varErrDescrip, Translate("[P1: Level detection, Liquid level not found."));
              if (Error_Channel != -1)
              {
                Ch1 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P2: Level detection, Liquid level not found."));
              if (Error_Channel != -1)
              {
                Ch2 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P3: Level detection, Liquid level not found."));
              if (Error_Channel != -1)
              {
                Ch3 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P4: Level detection, Liquid level not found."));
              if (Error_Channel != -1)
              {
                Ch4 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P5: Level detection, Liquid level not found."));
              if (Error_Channel != -1)
              {
                Ch5 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P6: Level detection, Liquid level not found."));
              if (Error_Channel != -1)
              {
                Ch6 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P7: Level detection, Liquid level not found."));
              if (Error_Channel != -1)
              {
                Ch7 = Translate("1");
              }
              Error_Channel = StrFind(varErrDescrip, Translate("[P8: Level detection, Liquid level not found."));
              if (Error_Channel != -1)
              {
                Ch8 = Translate("1");
              }
            }
            ChannelSelection_NoLiquidLevelFound = StrConcat8(Ch1, Ch2, Ch3, Ch4, Ch5, Ch6, Ch7, Ch8);
          }
        }
      }
      ChannelSelection_ClotDetected = StrFVal(ChannelSelection_ClotDetected);
      ChannelSelection_LiquidNotCorrectlyAspirated = StrFVal(ChannelSelection_LiquidNotCorrectlyAspirated);
      ChannelSelection_NotEnoughLiquidPresent = StrFVal(ChannelSelection_NotEnoughLiquidPresent);
      ChannelSelection_UnexpectedcLLDfound = StrFVal(ChannelSelection_UnexpectedcLLDfound);
      ChannelSelection_StepLostZdrive = StrFVal(ChannelSelection_StepLostZdrive);
      ChannelSelection_NoLiquidLevelFound = StrFVal(ChannelSelection_NoLiquidLevelFound);
      ChannelSelection_NotError = StrFVal(ChannelSelection_NotError);
      ChannelSelection_decapError = StrFVal(ChannelSelection_decapError);
      ChannelSelection_ClotDetected = MthCeiling(ChannelSelection_ClotDetected);
      ChannelSelection_LiquidNotCorrectlyAspirated = MthCeiling(ChannelSelection_LiquidNotCorrectlyAspirated);
      ChannelSelection_NotEnoughLiquidPresent = MthCeiling(ChannelSelection_NotEnoughLiquidPresent);
      ChannelSelection_UnexpectedcLLDfound = MthCeiling(ChannelSelection_UnexpectedcLLDfound);
      ChannelSelection_StepLostZdrive = MthCeiling(ChannelSelection_StepLostZdrive);
      ChannelSelection_NoLiquidLevelFound = MthCeiling(ChannelSelection_NoLiquidLevelFound);
      ChannelSelection_NotError = MthCeiling(ChannelSelection_NotError);
      ChannelSelection_decapError = MthCeiling(ChannelSelection_decapError);
      ChannelSelection_AllError = ChannelSelection_ClotDetected + ChannelSelection_LiquidNotCorrectlyAspirated;
      ChannelSelection_AllError = ChannelSelection_AllError + ChannelSelection_NotEnoughLiquidPresent;
      ChannelSelection_AllError = ChannelSelection_AllError + ChannelSelection_UnexpectedcLLDfound;
      ChannelSelection_AllError = ChannelSelection_AllError + ChannelSelection_StepLostZdrive;
      ChannelSelection_AllError = ChannelSelection_AllError + ChannelSelection_NoLiquidLevelFound;
      ChannelSelection_AllError = ChannelSelection_AllError + ChannelSelection_decapError;
      ChannelSelection_NotError = ChannelSelection_NotError - ChannelSelection_AllError;
      ChannelSelection_AllError2 = ChannelSelection_AllError - ChannelSelection_NotEnoughLiquidPresent;
      ChannelSelection_AllError2 = ChannelSelection_AllError2 - ChannelSelection_UnexpectedcLLDfound;
      ChannelSelection_AllError2 = ChannelSelection_AllError2 - ChannelSelection_StepLostZdrive;
      ChannelSelection_AllError2 = ChannelSelection_AllError2 - ChannelSelection_NoLiquidLevelFound;
      ChannelSelection_AllError2 = ChannelSelection_AllError2 - ChannelSelection_decapError;
      ChannelSelection_AllCh = ChannelSelection_AllError + ChannelSelection_NotError;
      ChannelSelection_NotError = Util2::ToString(ChannelSelection_NotError);
      ChannelSelection_ClotDetected = Util2::ToString(ChannelSelection_ClotDetected);
      ChannelSelection_LiquidNotCorrectlyAspirated = Util2::ToString(ChannelSelection_LiquidNotCorrectlyAspirated);
      ChannelSelection_NotEnoughLiquidPresent = Util2::ToString(ChannelSelection_NotEnoughLiquidPresent);
      ChannelSelection_UnexpectedcLLDfound = Util2::ToString(ChannelSelection_UnexpectedcLLDfound);
      ChannelSelection_StepLostZdrive = Util2::ToString(ChannelSelection_StepLostZdrive);
      ChannelSelection_NoLiquidLevelFound = Util2::ToString(ChannelSelection_NoLiquidLevelFound);
      ChannelSelection_AllError = Util2::ToString(ChannelSelection_AllError);
      ChannelSelection_AllError2 = Util2::ToString(ChannelSelection_AllError2);
      ChannelSelection_AllCh = Util2::ToString(ChannelSelection_AllCh);
      ChannelSelection_decapError = Util2::ToString(ChannelSelection_decapError);
      {
        for(loopCounter2 = 0; loopCounter2 < 11;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (loopCounter2 == 1)
          {
            ChannelSelection = ChannelSelection_AllError;
          }
          if (loopCounter2 == 2)
          {
            ChannelSelection = ChannelSelection_ClotDetected;
          }
          if (loopCounter2 == 3)
          {
            ChannelSelection = ChannelSelection_LiquidNotCorrectlyAspirated;
          }
          if (loopCounter2 == 4)
          {
            ChannelSelection = ChannelSelection_NotEnoughLiquidPresent;
          }
          if (loopCounter2 == 5)
          {
            ChannelSelection = ChannelSelection_NotError;
          }
          if (loopCounter2 == 6)
          {
            ChannelSelection = ChannelSelection_UnexpectedcLLDfound;
          }
          if (loopCounter2 == 7)
          {
            ChannelSelection = ChannelSelection_StepLostZdrive;
          }
          if (loopCounter2 == 8)
          {
            ChannelSelection = ChannelSelection_AllError2;
          }
          if (loopCounter2 == 9)
          {
            ChannelSelection = ChannelSelection_AllCh;
          }
          if (loopCounter2 == 10)
          {
            ChannelSelection = ChannelSelection_NoLiquidLevelFound;
          }
          if (loopCounter2 == 11)
          {
            ChannelSelection = ChannelSelection_decapError;
          }
          Length_ChannelSelection = StrGetLength(ChannelSelection);
          if (Length_ChannelSelection == 1)
          {
            ChannelSelection = StrConcat2(Translate("0000000"), ChannelSelection);
          }
          if (Length_ChannelSelection == 2)
          {
            ChannelSelection = StrConcat2(Translate("000000"), ChannelSelection);
          }
          if (Length_ChannelSelection == 3)
          {
            ChannelSelection = StrConcat2(Translate("00000"), ChannelSelection);
          }
          if (Length_ChannelSelection == 4)
          {
            ChannelSelection = StrConcat2(Translate("0000"), ChannelSelection);
          }
          if (Length_ChannelSelection == 5)
          {
            ChannelSelection = StrConcat2(Translate("000"), ChannelSelection);
          }
          if (Length_ChannelSelection == 6)
          {
            ChannelSelection = StrConcat2(Translate("00"), ChannelSelection);
          }
          if (Length_ChannelSelection == 7)
          {
            ChannelSelection = StrConcat2(Translate("0"), ChannelSelection);
          }
          if (loopCounter2 == 1)
          {
            ChannelSelection_AllError = ChannelSelection;
          }
          if (loopCounter2 == 2)
          {
            ChannelSelection_ClotDetected = ChannelSelection;
          }
          if (loopCounter2 == 3)
          {
            ChannelSelection_LiquidNotCorrectlyAspirated = ChannelSelection;
          }
          if (loopCounter2 == 4)
          {
            ChannelSelection_NotEnoughLiquidPresent = ChannelSelection;
          }
          if (loopCounter2 == 5)
          {
            ChannelSelection_NotError = ChannelSelection;
          }
          if (loopCounter2 == 6)
          {
            ChannelSelection_UnexpectedcLLDfound = ChannelSelection;
          }
          if (loopCounter2 == 7)
          {
            ChannelSelection_StepLostZdrive = ChannelSelection;
          }
          if (loopCounter2 == 8)
          {
            ChannelSelection_AllError2 = ChannelSelection;
          }
          if (loopCounter2 == 9)
          {
            ChannelSelection_AllCh = ChannelSelection;
          }
          if (loopCounter2 == 10)
          {
            ChannelSelection_NoLiquidLevelFound = ChannelSelection;
          }
          if (loopCounter2 == 11)
          {
            ChannelSelection_decapError = ChannelSelection;
          }
        }
      }
      Trace ("ChannelSelection_ClotDetected = ", ChannelSelection_ClotDetected);
      Trace ("ChannelSelection_LiquidNotCorrectlyAspirated = ", ChannelSelection_LiquidNotCorrectlyAspirated);
      Trace ("ChannelSelection_NotEnoughLiquidPresent = ", ChannelSelection_NotEnoughLiquidPresent);
      Trace ("ChannelSelection_UnexpectedcLLDfound = ", ChannelSelection_UnexpectedcLLDfound);
      Trace ("ChannelSelection_StepLostZdrive = ", ChannelSelection_StepLostZdrive);
      Trace ("ChannelSelection_NoLiquidLevelFound = ", ChannelSelection_NoLiquidLevelFound);
      Trace ("ChannelSelection_decapError = ", ChannelSelection_decapError);
      Trace ("ChannelSelection_AllError = ", ChannelSelection_AllError);
      Trace ("ChannelSelection_AllError2 = ", ChannelSelection_AllError2);
      Trace ("ChannelSelection_NotError = ", ChannelSelection_NotError);
      Trace ("ChannelSelection_AllCh = ", ChannelSelection_AllCh);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
  }
} // library namespace
