global device ML_STAR ("STARlet_v6.1.lay", "ML_STAR", hslTrue);
#include "STARlet_v6.1.res"
timer timer1;
dialog dialogHandle_1;
variable Method;
dialog dialogHandle_2;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslFalse);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 1);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    if( 0 == timer1.SetTimer(300) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == timer1.WaitTimer(hslTrue, hslFalse) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    dialogHandle_2.SetOutput(Translate("COMPLETED"), "\n");
    dialogHandle_2.ShowOutput(Method, hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  } }
