global device ML_STAR ("demo_HBV_masterMix_v2.lay", "ML_STAR", hslTrue);
#include "demo_HBV_masterMix_v2.res"
variable intVolumeMasterMIx_default;
variable intNumberOfSample;
variable intVolumeSample_default;
variable intVoumeIC_default;
variable intVolumeWaterNTC_default;
variable initVolumeQS_default;
variable loopCounter_DW96_masterMix;
variable intSampleEndPosition;
variable intVolumeMasterMix_aspirate;
variable intCurrentPosition;
variable intVolumeMasterMix_aspirate_temp;
variable intVolumeIC_aspirate;
variable loopCounter2;
variable loopCounter_Sample;
variable intCurrentPosition_sample;
dialog dialogHandle_1;
variable stringPipetteVariable;
variable i6;
variable i7;
variable i8;
variable min;
variable i2;
variable i3;
variable i4;
variable i5;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslFalse);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 1);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
    dialogHandle_1.SetInputSize(1);
    dialogHandle_1.SetInputField(0, Translate("declairation number of Sample"), hslInteger, 1, 1, 72);
    dialogHandle_1.ShowInput(Translate("Number of Sample?"), 120, hslOKCancel | hslDefButton1);
    intNumberOfSample = dialogHandle_1.GetInputField(0);
    intVolumeMasterMIx_default = 30;
    initVolumeQS_default = 20;
    intVolumeSample_default = 20;
    intVolumeWaterNTC_default = 20;
    stringPipetteVariable = Translate("");
    intVoumeIC_default = 2;
    intSampleEndPosition = intNumberOfSample + 6;
    intVolumeMasterMix_aspirate = intVolumeMasterMIx_default * intSampleEndPosition;
    if (intSampleEndPosition > 66)
    {
      stringPipetteVariable = Translate("11100000");
      intVolumeMasterMix_aspirate_temp = intVolumeMasterMix_aspirate / 3;
      intVolumeMasterMix_aspirate = intVolumeMasterMix_aspirate_temp + 20;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    }
    else
    {
      if (intSampleEndPosition > 30)
      {
        stringPipetteVariable = Translate("11000000");
        intVolumeMasterMix_aspirate_temp = intVolumeMasterMix_aspirate / 2;
        intVolumeMasterMix_aspirate = intVolumeMasterMix_aspirate_temp + 15;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      }
      else
      {
        stringPipetteVariable = Translate("10000000");
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      }
    }
    {
      loopCounter_DW96_masterMix = 0;
      while (
         (ML_STAR.demo_whiteStrip_all.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.demo_whiteStrip_all, 1);
        loopCounter_DW96_masterMix = loopCounter_DW96_masterMix + 1;
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        intCurrentPosition = ML_STAR.demo_whiteStrip_all.GetCurrentPosition();
        if (intCurrentPosition > intSampleEndPosition)
        {
          MECC::TraceComment(Translate("loop break"));
          break;
        }
        if (
           (ML_STAR.demo_whiteStrip_all.GetCurrentPosition() > 0 && ML_STAR.demo_whiteStrip_all.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.demo_whiteStrip_all.SetMax(ML_STAR.demo_whiteStrip_all.GetTotal());
      ML_STAR.demo_whiteStrip_all.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    intVolumeIC_aspirate = intVoumeIC_default * 6;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.demo_whiteStrip_IC.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.demo_whiteStrip_IC, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (ML_STAR.demo_whiteStrip_IC.GetCurrentPosition() > 0 && ML_STAR.demo_whiteStrip_IC.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.demo_whiteStrip_IC.SetMax(ML_STAR.demo_whiteStrip_IC.GetTotal());
      ML_STAR.demo_whiteStrip_IC.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    i2 = 1;
    i3 = 1;
    i4 = 1;
    i5 = 1;
    i6 = 1;
    i7 = 1;
    i8 = 1;
    min = 1;
    //find pipette variable;
    i2 = intNumberOfSample % 2;
    i3 = intNumberOfSample % 3;
    i4 = intNumberOfSample % 4;
    i5 = intNumberOfSample % 5;
    i6 = intNumberOfSample % 6;
    i7 = intNumberOfSample % 7;
    i8 = intNumberOfSample % 8;
    min = i8;
    stringPipetteVariable="11111111";
    //find the smallest
    if (i7<min){min=i7; stringPipetteVariable="11111110";}
    if (i6<min){min=i6; stringPipetteVariable="11111100";}
    if (i5<min){min=i5; stringPipetteVariable="11111000";}
    if (i4<min){min=i4; stringPipetteVariable="11110000";}
    if (i3<min){min=i3; stringPipetteVariable="11100000";}
    if (i2<min){min=i2; stringPipetteVariable="11000000";}
    if (intNumberOfSample==1){stringPipetteVariable="10000000";}
    {
      loopCounter_Sample = 0;
      while (
         (ML_STAR.demo_DW96_samples.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.demo_DW96_samples, 1);
        loopCounter_Sample = loopCounter_Sample + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        intCurrentPosition_sample = ML_STAR.demo_DW96_samples.GetCurrentPosition();
        if (intCurrentPosition_sample > intNumberOfSample)
        {
          MECC::TraceComment(Translate("loop break"));
          break;
        }
        if (
           (ML_STAR.demo_DW96_samples.GetCurrentPosition() > 0 && ML_STAR.demo_DW96_samples.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.demo_DW96_samples.SetMax(ML_STAR.demo_DW96_samples.GetTotal());
      ML_STAR.demo_DW96_samples.SetCurrentPosition(1);
    }
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  } }
