#include "HIV_masterMix_sampleCarrierInput.res"
global device ML_STAR ("HIV_masterMix_sampleCarrierInput.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLTipCountingLib.hsl" }
variable loopCounter7;
variable intVolume_water;
variable intVolume_MasterMix_A_aspirate;
variable intEndPosition_sample_1;
variable breakPoint;
variable loopCounter8;
variable loopCounter9;
variable i;
variable intVolume_IC_aspirate;
variable stringPipetteVariable;
variable intVolume_MasterMix_B_aspirate;
variable intNumberOfSample;
variable all_tips_300ul_full_counter;
variable intSampleEndPosition_1;
variable intVolume_IC;
variable all_tips_1000ul_full_counter;
variable intCurrentPosition_sample;
variable loopCounter1;
variable intVolume_sample;
variable loopCounter2;
variable intVolume_masterMix_A;
variable loopCounter3;
variable intSampleEndPosition;
variable intVolume_masterMix_B;
variable loopCounter4;
variable loopCounter5;
variable file1_No_Sample;
variable intVolume_QS;
variable loopCounter6;
file file1;
variable file1_No_1;
variable file1_No_2;
variable file1_No_3;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslFalse);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 1);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    intVolume_masterMix_A = 12;
    intVolume_masterMix_B = 18;
    intVolume_sample = 20;
    intVolume_IC = 2;
    intVolume_QS = 20;
    intVolume_water = 20;
    stringPipetteVariable = Translate("");
    breakPoint = 24;
    file1.AddField("No#Sample", file1_No_Sample, hslFloat);
    if( 0 == file1.Open("D:\\phuongDongServiceSoftware\\dev_app\\main_v2\\input.xls" + " " + "Master$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "D:\\phuongDongServiceSoftware\\dev_app\\main_v2\\input.xls", "HxMetEdCompCmd");
    }
    {
      loopCounter3 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter3 = loopCounter3 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        intNumberOfSample = file1_No_Sample;
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    all_tips_1000ul_full_counter = Translate("0");
    TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, all_tips_1000ul_full_counter, ML_STAR, 300);
    all_tips_300ul_full_counter = Translate("0");
    TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, all_tips_300ul_full_counter, ML_STAR, 300);
    if(0){
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      if (intNumberOfSample > 64)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      else
      {
        if (intNumberOfSample > 32)
        {
          ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
          ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        }
        else
        {
          ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        }
      }
    }
    intSampleEndPosition = intNumberOfSample + 5;
    if (intSampleEndPosition > breakPoint)
    {
      stringPipetteVariable = Translate("10000000");
      intVolume_MasterMix_A_aspirate = intVolume_masterMix_A * breakPoint;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      {
        loopCounter1 = 0;
        ML_STAR.HIV_whiteStrip_masterMix.SetCurrentPosition(1);
        while (
           (ML_STAR.HIV_whiteStrip_masterMix.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.HIV_whiteStrip_masterMix, 1);
          loopCounter1 = loopCounter1 + 1;
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (loopCounter1 == breakPoint)
          {
            break;
          }
          if (
             (ML_STAR.HIV_whiteStrip_masterMix.GetCurrentPosition() > 0 && ML_STAR.HIV_whiteStrip_masterMix.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.HIV_whiteStrip_masterMix.SetMax(ML_STAR.HIV_whiteStrip_masterMix.GetTotal());
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      intSampleEndPosition_1 = intSampleEndPosition - breakPoint;
      intVolume_MasterMix_A_aspirate = intVolume_masterMix_A * intSampleEndPosition_1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      {
        loopCounter2 = 0;
        while (
           (ML_STAR.HIV_whiteStrip_masterMix.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.HIV_whiteStrip_masterMix, 1);
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (loopCounter2 == intSampleEndPosition_1)
          {
            break;
          }
          if (
             (ML_STAR.HIV_whiteStrip_masterMix.GetCurrentPosition() > 0 && ML_STAR.HIV_whiteStrip_masterMix.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.HIV_whiteStrip_masterMix.SetMax(ML_STAR.HIV_whiteStrip_masterMix.GetTotal());
        ML_STAR.HIV_whiteStrip_masterMix.SetCurrentPosition(1);
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    if (intSampleEndPosition <= breakPoint)
    {
      stringPipetteVariable = Translate("10000000");
      intVolume_MasterMix_A_aspirate = intVolume_masterMix_A * intSampleEndPosition;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      {
        loopCounter4 = 0;
        ML_STAR.HIV_whiteStrip_masterMix.SetCurrentPosition(1);
        while (
           (ML_STAR.HIV_whiteStrip_masterMix.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.HIV_whiteStrip_masterMix, 1);
          loopCounter4 = loopCounter4 + 1;
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (loopCounter4 == intSampleEndPosition)
          {
            break;
          }
          if (
             (ML_STAR.HIV_whiteStrip_masterMix.GetCurrentPosition() > 0 && ML_STAR.HIV_whiteStrip_masterMix.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.HIV_whiteStrip_masterMix.SetMax(ML_STAR.HIV_whiteStrip_masterMix.GetTotal());
        ML_STAR.HIV_whiteStrip_masterMix.SetCurrentPosition(1);
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    MECC::TraceComment(Translate("master mix A done"));
    intSampleEndPosition = intNumberOfSample + 5;
    if (intSampleEndPosition > breakPoint)
    {
      stringPipetteVariable = Translate("10000000");
      intVolume_MasterMix_B_aspirate = intVolume_masterMix_B * breakPoint;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      {
        loopCounter5 = 0;
        ML_STAR.HIV_whiteStrip_masterMix.SetCurrentPosition(1);
        while (
           (ML_STAR.HIV_whiteStrip_masterMix.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.HIV_whiteStrip_masterMix, 1);
          loopCounter5 = loopCounter5 + 1;
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (loopCounter5 == breakPoint)
          {
            break;
          }
          if (
             (ML_STAR.HIV_whiteStrip_masterMix.GetCurrentPosition() > 0 && ML_STAR.HIV_whiteStrip_masterMix.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.HIV_whiteStrip_masterMix.SetMax(ML_STAR.HIV_whiteStrip_masterMix.GetTotal());
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      intSampleEndPosition_1 = intSampleEndPosition - breakPoint;
      intVolume_MasterMix_B_aspirate = intVolume_masterMix_B * intSampleEndPosition_1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      {
        loopCounter6 = 0;
        while (
           (ML_STAR.HIV_whiteStrip_masterMix.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.HIV_whiteStrip_masterMix, 1);
          loopCounter6 = loopCounter6 + 1;
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (loopCounter6 == intSampleEndPosition_1)
          {
            break;
          }
          if (
             (ML_STAR.HIV_whiteStrip_masterMix.GetCurrentPosition() > 0 && ML_STAR.HIV_whiteStrip_masterMix.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.HIV_whiteStrip_masterMix.SetMax(ML_STAR.HIV_whiteStrip_masterMix.GetTotal());
        ML_STAR.HIV_whiteStrip_masterMix.SetCurrentPosition(1);
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    if (intSampleEndPosition <= breakPoint)
    {
      stringPipetteVariable = Translate("10000000");
      intVolume_MasterMix_B_aspirate = intVolume_masterMix_B * intSampleEndPosition;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      {
        loopCounter7 = 0;
        ML_STAR.HIV_whiteStrip_masterMix.SetCurrentPosition(1);
        while (
           (ML_STAR.HIV_whiteStrip_masterMix.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.HIV_whiteStrip_masterMix, 1);
          loopCounter7 = loopCounter7 + 1;
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (loopCounter7 == intSampleEndPosition)
          {
            break;
          }
          if (
             (ML_STAR.HIV_whiteStrip_masterMix.GetCurrentPosition() > 0 && ML_STAR.HIV_whiteStrip_masterMix.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.HIV_whiteStrip_masterMix.SetMax(ML_STAR.HIV_whiteStrip_masterMix.GetTotal());
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    MECC::TraceComment(Translate("master mix B done"));
    intVolume_IC_aspirate = intVolume_IC * 5;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    {
      loopCounter8 = 0;
      ML_STAR.HIV_whiteStrip_IC.SetCurrentPosition(1);
      while (
         (ML_STAR.HIV_whiteStrip_IC.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.HIV_whiteStrip_IC, 1);
        loopCounter8 = loopCounter8 + 1;
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (ML_STAR.HIV_whiteStrip_IC.GetCurrentPosition() > 0 && ML_STAR.HIV_whiteStrip_IC.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.HIV_whiteStrip_IC.SetMax(ML_STAR.HIV_whiteStrip_IC.GetTotal());
      ML_STAR.HIV_whiteStrip_IC.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    stringPipetteVariable = Translate("11110000");
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    stringPipetteVariable = Translate("10000000");
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    i = 0;
    intEndPosition_sample_1 = 1;
    //find pipette varaiable
    i=intNumberOfSample%8;
    intEndPosition_sample_1=intNumberOfSample-i;
    if (intNumberOfSample < 8)
    {
      if(i==7){stringPipetteVariable="11111110";}
      if(i==6){stringPipetteVariable="11111100";}
      if(i==5){stringPipetteVariable="11111000";}
      if(i==4){stringPipetteVariable="11110000";}
      if(i==3){stringPipetteVariable="11100000";}
      if(i==2){stringPipetteVariable="11000000";}
      if(i==1){stringPipetteVariable="10000000";}
      {
        loopCounter9 = 0;
        while (
           (ML_STAR.HIV_SMP_CAR_32_sample.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.HIV_SMP_CAR_32_sample, 1);
          loopCounter9 = loopCounter9 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          intCurrentPosition_sample = ML_STAR.HIV_SMP_CAR_32_sample.GetCurrentPosition();
          if (intCurrentPosition_sample > intEndPosition_sample_1)
          {
            MECC::TraceComment(Translate("loop break"));
            break;
          }
          if (
             (ML_STAR.HIV_SMP_CAR_32_sample.GetCurrentPosition() > 0 && ML_STAR.HIV_SMP_CAR_32_sample.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.HIV_SMP_CAR_32_sample.SetMax(ML_STAR.HIV_SMP_CAR_32_sample.GetTotal());
        ML_STAR.HIV_SMP_CAR_32_sample.SetCurrentPosition(1);
      }
    }
    else
    {
      {
        loopCounter9 = 0;
        while (
           (ML_STAR.HIV_SMP_CAR_32_sample.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.HIV_SMP_CAR_32_sample, 1);
          loopCounter9 = loopCounter9 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          intCurrentPosition_sample = ML_STAR.HIV_SMP_CAR_32_sample.GetCurrentPosition();
          if (intCurrentPosition_sample > intEndPosition_sample_1)
          {
            MECC::TraceComment(Translate("loop break"));
            break;
          }
          if (
             (ML_STAR.HIV_SMP_CAR_32_sample.GetCurrentPosition() > 0 && ML_STAR.HIV_SMP_CAR_32_sample.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.HIV_SMP_CAR_32_sample.SetMax(ML_STAR.HIV_SMP_CAR_32_sample.GetTotal());
        ML_STAR.HIV_SMP_CAR_32_sample.SetCurrentPosition(1);
      }
      if (i != 0)
      {
        if(i==7){stringPipetteVariable="11111110";}
        if(i==6){stringPipetteVariable="11111100";}
        if(i==5){stringPipetteVariable="11111000";}
        if(i==4){stringPipetteVariable="11110000";}
        if(i==3){stringPipetteVariable="11100000";}
        if(i==2){stringPipetteVariable="11000000";}
        if(i==1){stringPipetteVariable="10000000";}
        {
          loopCounter9 = 0;
          while (
             (ML_STAR.HIV_SMP_CAR_32_sample.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.HIV_SMP_CAR_32_sample, 1);
            loopCounter9 = loopCounter9 + 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            intCurrentPosition_sample = ML_STAR.HIV_SMP_CAR_32_sample.GetCurrentPosition();
            if (intCurrentPosition_sample > intEndPosition_sample_1)
            {
              MECC::TraceComment(Translate("loop break"));
              break;
            }
            if (
               (ML_STAR.HIV_SMP_CAR_32_sample.GetCurrentPosition() > 0 && ML_STAR.HIV_SMP_CAR_32_sample.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.HIV_SMP_CAR_32_sample.SetMax(ML_STAR.HIV_SMP_CAR_32_sample.GetTotal());
          ML_STAR.HIV_SMP_CAR_32_sample.SetCurrentPosition(1);
        }
      }
    }
    if(0){
      {
        loopCounter9 = 0;
        while (
           (ML_STAR.HIV_SMP_CAR_32_sample.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.HIV_SMP_CAR_32_sample, 1);
          loopCounter9 = loopCounter9 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          intCurrentPosition_sample = ML_STAR.HIV_SMP_CAR_32_sample.GetCurrentPosition();
          if (intCurrentPosition_sample > intEndPosition_sample_1)
          {
            MECC::TraceComment(Translate("loop break"));
            break;
          }
          if(i==7){stringPipetteVariable="11111110";}
          if(i==6){stringPipetteVariable="11111100";}
          if(i==5){stringPipetteVariable="11111000";}
          if(i==4){stringPipetteVariable="11110000";}
          if(i==3){stringPipetteVariable="11100000";}
          if(i==2){stringPipetteVariable="11000000";}
          if(i==1){stringPipetteVariable="10000000";}
          {
            loopCounter9 = 0;
            while (
               (ML_STAR.HIV_SMP_CAR_32_sample.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, ML_STAR.HIV_SMP_CAR_32_sample, 1);
              loopCounter9 = loopCounter9 + 1;
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              intCurrentPosition_sample = ML_STAR.HIV_SMP_CAR_32_sample.GetCurrentPosition();
              if (intCurrentPosition_sample > intEndPosition_sample_1)
              {
                MECC::TraceComment(Translate("loop break"));
                break;
              }
              if (
                 (ML_STAR.HIV_SMP_CAR_32_sample.GetCurrentPosition() > 0 && ML_STAR.HIV_SMP_CAR_32_sample.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            ML_STAR.HIV_SMP_CAR_32_sample.SetMax(ML_STAR.HIV_SMP_CAR_32_sample.GetTotal());
            ML_STAR.HIV_SMP_CAR_32_sample.SetCurrentPosition(1);
          }
          if (
             (ML_STAR.HIV_SMP_CAR_32_sample.GetCurrentPosition() > 0 && ML_STAR.HIV_SMP_CAR_32_sample.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.HIV_SMP_CAR_32_sample.SetMax(ML_STAR.HIV_SMP_CAR_32_sample.GetTotal());
        ML_STAR.HIV_SMP_CAR_32_sample.SetCurrentPosition(1);
      }
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, all_tips_1000ul_full_counter, ML_STAR);
    TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, all_tips_300ul_full_counter, ML_STAR);
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  } }
