 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "SMTs\\Tip Present Check.hs_" }
 namespace _Method { #include "HSLChoiceDialog.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "SubMethodLib\\Extraction_STARlet_v6.hs_" }
 namespace _Method { #include "SubMethodLib\\PCR_Set_Up_STARlet_v6.hs_" }
 namespace _Method { #include "HSLMlStarStepReturnLib.hsl" }
 namespace _Method { #include "HSLErrLib.hsl" }
#include "STARlet_v6.1.res"
variable iSwap;
variable Clot_Occurs;
variable file1_SimOn;
variable fileB_No_;
variable Sample_Cnt_Ini;
variable Sample_Cnt_PRODUCT_001;
variable fileB_Barcode;
variable Sample_Cnt_Flag;
variable Sample_Cnt_PRODUCT_002;
variable Sample_Cnt_PRODUCT_003;
variable Sample_Cnt;
variable Sample_Cnt_PRODUCT_004;
variable file1_User;
variable fileB_PRODUCT_1;
variable fileB_PRODUCT_2;
variable fileB_PRODUCT_3;
variable fileB_PRODUCT_4;
variable loopCounter5;
file fileB;
variable file4_Step_Name;
variable file4_Liquid_Class;
variable file4_Incu_Temp;
variable file4_Seq_Shaker_1;
variable file11_Plate;
variable file11_NC_No;
variable PCR_Remain_PRODUCT_001_1st_Tube;
variable First_Position_PRODUCT_001;
variable file9_Product_No;
variable file4_Seq_Shaker_2;
variable file7_Rack;
variable file2_WTC_No;
variable file2_Product_No;
variable file9_PCR_Remain;
variable First_Position_PRODUCT_002;
variable file4_PreAliq_Disp_Bottom_Height;
variable file4_Disp_Bottom_Height;
variable PCR_Remain_PRODUCT_001;
variable file11_Step;
variable file11_Product_Name;
variable file11_PC_No;
variable file2_Tube;
variable file2_PCR_Remain;
variable First_Position_PRODUCT_003;
variable loopCounter9;
variable file2_IC_No;
variable file4_Asp_ADC_On;
variable file4_PreAliq_Disp_cLLD_On;
variable file7_Product_Name;
variable PCR_Remain_PRODUCT_002;
variable First_Position_PRODUCT_004;
variable file9_Step;
variable file4_Asp_cLLD_On;
variable file11_SD_No;
variable file11_WTC_No;
variable file2_Extraction_Kit;
variable PCR_Remain_PRODUCT_003;
variable file9_Product_Name;
variable file7_Set_No;
variable file4_PreAliq_Disp_Submerge_Depth;
variable file4_Disp_Postmix_Vol;
variable file7_Step;
variable PCR_Remain_PRODUCT_002_1st_Tube;
variable PCR_Remain_PRODUCT_004;
variable Step_Name;
variable file4_Asp_Base1;
variable file4_Disp_Postmix_ASD;
variable file2_Rack;
variable file7_IC_No;
variable file4_Enable;
variable file4_Asp_Premix_Vol;
variable file7_Extraction_Kit;
variable file2_Plate;
variable file2_NC_No;
variable file9_IC_No;
variable file2_Set_No;
variable file4_Asp_Submerge_Depth;
variable file4_Asp_Premix_ASD;
variable file4_Disp_Base1;
variable file4_Disp_cLLD_On;
variable file4_Disp_Postmix_Cycle;
variable file4_Seq_Magnet_0;
variable file7_Product_No;
variable file4_Liquid_Class_2;
variable file4_Asp_Base4;
variable file4_PreAliq_Volume;
variable file4_Disp_Submerge_Depth;
variable file4_Seq_Magnet_1;
variable file7_PCR_Remain;
variable file2_PC_No;
variable file4_Incu_Time;
variable file4_Seq_Magnet_2;
variable file2_Step;
variable file11_Set_No;
variable file9_WTC_No;
variable PCR_Remain_PRODUCT_003_1st_Tube;
variable Strip_Cnt_PRODUCT_Total;
variable loopCounter1;
variable file4_SubMethod;
variable file4_Asp_Premix_Cycle;
variable file4_PreAliq_Retract_Distance;
variable file4_Disp_Base4;
variable file7_Plate;
variable file7_NC_No;
variable file11_Tube;
variable file2_SD_No;
variable file2_Code;
variable loopCounter2;
variable file4_Disp_position;
variable file4_Incu_Speed;
variable file2_Clot;
variable file2_PCR_Barcode;
variable file9_Tube;
variable file9_Plate;
variable file9_NC_No;
variable file11_IC_No;
variable file3_Tip_Sequence;
variable file4_Asp_position;
variable file4_Asp_Base8;
variable file4_Start_Location;
variable file4_Check_DWP;
variable file4_Reuse_Tip;
variable file7_PC_No;
variable Strip_Cnt_PRODUCT_001;
variable file11_Extraction_Kit;
variable file11_Product_No;
variable Use_300ul_Tips;
variable file4_No;
variable file4_Tip_Sequence;
variable file7_Tube;
variable file7_WTC_No;
variable file11_PCR_Remain;
variable Strip_Cnt_PRODUCT_002;
variable file9_PC_No;
variable file4_Volume;
variable file4_Asp_Bottom_Height;
variable file4_Asp_Retract_Distance;
variable file4_Disp_Base8;
variable file7_SD_No;
variable file11_Rack;
variable PCR_Remain_PRODUCT_004_1st_Tube;
variable Random_Access;
variable STARMag_Remain;
variable file9_Extraction_Kit;
variable Strip_Cnt_PRODUCT_003;
variable file4_Asp_position_2nd;
variable file4_Disp_Retract_Distance;
variable file4_Target_Location;
variable file4_Seq_Shaker_0;
variable file4_Seq_Shaker_1_Bead;
variable file2_Product_Name;
variable file2_PC_NC;
variable Strip_Cnt_PRODUCT_004;
variable file9_Rack;
variable file9_SD_No;
variable file9_Set_No;
file file2;
file file3;
file file4;
file file7;
file file9;
file file11;
sequence para_Tips;
variable SampleRack;
variable PLATE;
variable RackType;
variable TubeType;
variable STEP;
sequence seq_Tub_3;
sequence seq_Tub_4;
sequence seq_Bead_2;
sequence seq_Tub_5;
sequence Seq_SampleRacks_A;
sequence seq_Tub_6;
sequence seq_DWP96;
sequence Seq_SampleRacks_B;
sequence seq_Tub_1_2;
sequence Seq_SampleRacks_C;
sequence seq_Tub_2_2;
sequence Seq_SampleRacks_D;
sequence seq_Tub_3_2;
sequence seq_Liquidwaste;
sequence Seq_SampleRacks;
sequence seq_Tub_4_2;
sequence seq_Bead;
sequence para_BB_Position_2nd;
sequence seq_Tub_5_2;
sequence seq_Tub_6_2;
sequence para_Bead_Position_2nd;
sequence para_BB_Position;
sequence seq_PK;
sequence seq_DWP96_Magnet;
sequence seq_Tub_1;
sequence seq_DWP96_HHS;
sequence seq_Tub_2;
sequence para_Bead_Position;
variable SeqGetTotal_NC;
sequence seq_Disp_Sample_B;
sequence seq_Disp_MM_C;
sequence seq_Disp_Sample_C;
sequence seq_Disp_MM_D;
sequence seq_Disp_Sample_D;
sequence seq_Disp_NC_A;
sequence seq_Disp_NC_B;
sequence seq_Disp_NC_C;
sequence seq_Disp_NC_D;
sequence seq_Disp_MM_A;
sequence seq_Disp_Sample_A;
sequence seq_Disp_MM_B;
variable SeqGetTotal_para_Asp_position_2nd;
variable para_Volume;
variable para_PreAliq_Disp_cLLD_On;
variable para_Incu_Speed;
variable para_Incu_Time;
variable para_Liquid_Class;
variable para_Asp_Premix_Vol;
variable para_PreAliq_Volume;
variable para_Disp_Postmix_Cycle;
variable para_Asp_Submerge_Depth;
variable para_Asp_Premix_ASD;
variable para_Reuse_Tip;
variable para_Liquid_Class_2;
variable para_Check_DWP;
variable SeqGetTotal_para_Disp_position;
variable para_Disp_Retract_Distance;
variable para_Asp_Bottom_Height;
variable para_Asp_ADC_On;
variable para_Incu_Temp;
variable para_Disp_Submerge_Depth;
variable para_Disp_Postmix_Vol;
variable para_Asp_cLLD_On;
variable para_PreAliq_Retract_Distance;
variable para_Disp_Postmix_ASD;
variable para_Disp_cLLD_On;
variable para_PreAliq_Disp_Bottom_Height;
variable para_Asp_Retract_Distance;
variable para_PreAliq_Disp_Submerge_Depth;
variable SeqGetTotal_para_Asp_position;
variable para_Disp_Bottom_Height;
variable para_Asp_Premix_Cycle;
sequence para_Asp_position_2nd;
sequence para_Start_Location;
sequence seq_Asp_Sample_A;
sequence para_Target_Location;
sequence seq_Asp_Sample_B;
sequence seq_Asp_Sample_C;
sequence seq_Asp_Sample_D;
sequence seq_1st_tube;
sequence seq_2nd_tube;
sequence para_Disp_position;
sequence para_Asp_position;
variable fileB_Urine;
variable fileB_12mm;
variable fileB_1_5ml;
variable fileB_16mm;
variable ChPattern_Remain;
variable ChPattern_Chk;
variable HHS1;
variable Tub_2_Remain;
variable file4_Liquid_Class_3;
variable para_Liquid_Class_3;
variable Tip_Carrier_1mL;
variable Tip_Carrier_300uL;
variable SeqGetTotal_SampleRacks_A;
variable SeqGetTotal_SampleRacks_B;
variable SeqGetTotal_SampleRacks_C;
variable SeqGetTotal_SampleRacks_D;
variable SeqGetTotal_SampleRacks;
sequence seq_Asp_Sample;
variable fileB_Thinprep;
variable Use_All_Tips_Thinprep;
variable Tip_Carrier_1mL_Thinprep;
variable file33_Tip_Sequence;
file file33;
variable ChPattern_Chk4;
variable ChPattern_Remain12;
variable ChPattern_Remain2;
variable Use_All_Tips_Full;
variable Use_All_Tips_Part;
variable TipsOnDeck_300_start;
variable TipsOnDeck_1000_start;
variable TipsOnDeck_300_end;
variable Tip_1000ul;
variable TipsOnDeck_1000_end;
variable Tip_300ul;
variable Tip_1000ul_Part;
variable TipsOnDeck_1000_Part_end;
variable TipsOnDeck_1000_Part_start;
variable TipsOnDeck_Thinprep;
variable TipsOnDeck_300;
variable TipsOnDeck_New_Full;
variable TipsOnDeck_New_Part;
variable file2_Sample_Unload;
variable file2_Remaining_2X_Vol;
variable file2_Asp_position_2nd;
variable para_PreAliq_Bottom;
variable para_PreAliq_Submerge_Depth;
variable para_PreAliq_cLLD_On;
variable file2_2X_Enzyme_Height;
variable file3_2X_Enzyme_Height;
variable LiquidNotFound;
variable LiquidNotFound_Handling;
variable file13_Step;
variable fileB_PRODUCT_7;
variable file13_Plate;
variable file13_NC_No;
variable fileB_PRODUCT_8;
variable fileB_PRODUCT_9;
variable file13_Product_Name;
variable file13_PC_No;
variable PCR_Remain_PRODUCT_005_1st_Tube;
variable file13_Extraction_Kit;
variable Sample_Cnt_PRODUCT_010;
variable fileB_PRODUCT_10;
variable file13_Set_No;
variable file13_SD_No;
variable Sample_Cnt_PRODUCT_011;
variable fileB_PRODUCT_11;
variable file13_Product_No;
variable Sample_Cnt_PRODUCT_012;
variable fileB_PRODUCT_12;
variable file13_PCR_Remain;
variable file13_Tube;
variable Sample_Cnt_PRODUCT_005;
variable Sample_Cnt_PRODUCT_006;
variable Sample_Cnt_PRODUCT_007;
variable file13_Rack;
variable file13_IC_No;
variable Sample_Cnt_PRODUCT_008;
variable Sample_Cnt_PRODUCT_009;
variable fileB_PRODUCT_5;
variable file13_WTC_No;
variable fileB_PRODUCT_6;
file file13;
variable PCR_Remain_PRODUCT_005;
variable file15_Set_No;
variable file15_Plate;
variable file15_NC_No;
variable file15_Product_Name;
variable file15_PC_No;
variable PCR_Remain_PRODUCT_006;
variable file15_Tube;
variable file15_SD_No;
variable PCR_Remain_PRODUCT_006_1st_Tube;
variable file15_Rack;
variable file15_WTC_No;
variable file15_Extraction_Kit;
variable file15_Step;
variable file15_Product_No;
variable file15_IC_No;
variable file15_PCR_Remain;
file file15;
variable file17_Extraction_Kit;
variable file17_Plate;
variable file17_NC_No;
variable file17_Tube;
variable file17_Product_Name;
variable file17_PC_No;
variable file17_WTC_No;
variable PCR_Remain_PRODUCT_007;
variable file17_Product_No;
variable file17_SD_No;
variable file17_Rack;
variable file17_PCR_Remain;
variable file17_Set_No;
variable file17_Step;
variable PCR_Remain_PRODUCT_007_1st_Tube;
variable file17_IC_No;
file file17;
variable file19_Product_No;
variable file19_IC_No;
variable PCR_Remain_PRODUCT_008_1st_Tube;
variable file19_PCR_Remain;
variable file19_WTC_No;
variable file19_Tube;
variable file19_Plate;
variable file19_NC_No;
variable file19_Rack;
variable file19_PC_No;
variable file19_Set_No;
variable file19_Product_Name;
variable PCR_Remain_PRODUCT_008;
variable file19_SD_No;
variable file19_Step;
variable file19_Extraction_Kit;
file file19;
variable file21_WTC_No;
variable file21_IC_No;
variable file21_Product_No;
variable file21_Step;
variable file21_PCR_Remain;
variable PCR_Remain_PRODUCT_009_1st_Tube;
variable file21_Plate;
variable file21_NC_No;
variable file21_Set_No;
variable file21_Extraction_Kit;
variable file21_PC_No;
variable PCR_Remain_PRODUCT_009;
variable file21_Product_Name;
variable file21_SD_No;
variable file21_Tube;
variable file21_Rack;
file file21;
variable PCR_Remain_PRODUCT_010;
variable file23_Step;
variable file23_Set_No;
variable file23_IC_No;
variable PCR_Remain_PRODUCT_010_1st_Tube;
variable file23_Plate;
variable file23_NC_No;
variable file23_PC_No;
variable file23_Tube;
variable file23_Product_No;
variable file23_SD_No;
variable file23_Product_Name;
variable file23_PCR_Remain;
variable file23_WTC_No;
variable file23_Rack;
variable file23_Extraction_Kit;
file file23;
variable PCR_Remain_PRODUCT_011;
variable file25_Product_No;
variable file25_IC_No;
variable file25_PCR_Remain;
variable file25_Extraction_Kit;
variable file25_Tube;
variable file25_WTC_No;
variable file25_Plate;
variable file25_NC_No;
variable file25_PC_No;
variable PCR_Remain_PRODUCT_011_1st_Tube;
variable file25_Rack;
variable file25_Product_Name;
variable file25_SD_No;
variable file25_Set_No;
variable file25_Step;
file file25;
variable PCR_Remain_PRODUCT_012;
variable file27_WTC_No;
variable file27_IC_No;
variable file27_Tube;
variable file27_Set_No;
variable file27_Rack;
variable file27_Plate;
variable file27_NC_No;
variable file27_PC_No;
variable file27_Product_No;
variable file27_Step;
variable file27_Extraction_Kit;
variable file27_SD_No;
variable file27_PCR_Remain;
variable file27_Product_Name;
variable PCR_Remain_PRODUCT_012_1st_Tube;
file file27;
dialog dialogHandle_1;
dialog dialogHandle_2;
dialog dialogHandle_3;
dialog dialogHandle_4;
dialog dialogHandle_5;
dialog dialogHandle_6;
dialog dialogHandle_7;
variable SMP_CAR_12_Thinprep_007;
variable SMP_CAR_12_Thinprep_008;
variable SMP_CAR_32_001;
variable SMP_CAR_32_002;
variable SMP_CAR_32_003;
variable SMP_CAR_24_001;
variable SMP_CAR_24_002;
variable SMP_CAR_24_003;
variable SMP_CAR_24_004;
variable SMP_CAR_12_Thinprep_001;
variable SMP_CAR_12_Thinprep_002;
variable SMP_CAR_12_Thinprep_003;
variable SMP_CAR_12_Thinprep_004;
variable SMP_CAR_12_Thinprep_005;
variable SMP_CAR_12_Thinprep_006;
variable file2_PPC_No;
variable file7_PPC_No;
variable file9_PPC_No;
variable file11_PPC_No;
variable para_PPC_No;
sequence seq_Disp_PPC_A;
sequence seq_Disp_PPC_B;
sequence seq_Disp_PPC_C;
sequence seq_Disp_PPC_D;
sequence seq_PPC_tube;
variable loopCounter55;
variable No_Tip_Error_Flag;
variable No_Ctrdge_Error_Flag;
variable loopCounter70;
variable ChPatternAbort;
variable Ctrdge_height;
variable Ctrdge_2nd_height;
variable No_PK_Error_Flag;
variable No_IC_Error_Flag;
variable Checked_IC;
variable Checked_PK;
variable Checked_Ctrdge;
variable ChPattern_Chk_PKBeads;
variable ChPattern_Chk_IC;
variable Used_IC_No;
variable Check_reagent;
variable Copy_Tip_Sequence;
variable loopCounter45;
variable StepChk_IC_Flag;
variable StepChk_PKBead_Flag;
variable SubMethod_right;
variable StepChk_Bead_Flag;
variable StepChk_Ctrdg_Flag;
variable Use_BLB;
variable StepChk_Chk;
variable StepChk_WB2_Flag;
variable StepChk_Thinprep_AfterSample;
variable StepChk_Build;
variable Chk_BarcodePos1;
variable Chk_BarcodePos2;
variable Position_Barcode_Plate;
variable Chk_BarcodePos3;
variable file2_BarcodePlate;
variable Barcode_Error_Flag;
variable DWP_Barcodemask;
variable file2_BarcodeDWP;
variable Return_BarcodePos1;
variable Return_Barcode;
variable Plate2_BarcodeCnt;
variable DWP_BarcodeCnt;
variable Renewal_Flag;
variable Return_ChkBarcode;
variable Dupli_Flag;
variable Plate1_BarcodeCnt;
variable Return_BarcodePos2;
variable Return_BarcodePos3;
file file5;
variable file2_Carrier_Unload;
dialog dialogHandle_8;
dialog dialogHandle_9;
dialog dialogHandle_10;
dialog dialogHandle_11;
dialog dialogHandle_12;
dialog dialogHandle_13;
dialog dialogHandle_14;
dialog dialogHandle_15;
dialog dialogHandle_16;
variable Plate_Quantity;
dialog dialogHandle_17;
global device ML_STAR ("STARlet_v6.1.lay", "ML_STAR", hslTrue);
variable Tip_Carrier_2nd_1;
variable size_Tips_part;
variable Tip_Carrier_2nd_2;
variable loopCounter_tip_full;
variable LabwareID_Tips_Part;
variable Tip_Carrier_2nd_3;
variable Tip_Carrier_1st;
variable Tip_Carrier_2nd_4;
variable LabwareID_Tips_300;
variable Tip_Carrier_2nd_5;
variable Length_Tip_Carrier_2nd;
variable loopCounter_tip_thinprep;
variable size_Tips_thinprep;
variable Tip_Carrier_3rd;
variable loopCounter_tip_part;
variable Tip_Carrier_2nd;
variable size_Tips_Full;
variable Tip_Carrier_1st_1;
variable Tip_Carrier_1st_2;
variable LabwareID_Tips_Full;
variable Tip_Carrier_1st_3;
variable size_Tips_300;
variable Tip_Carrier_1st_4;
variable loopCounter_tip_300;
variable Tip_Carrier_1st_5;
variable Length_Tip_Carrier_1st;
variable LabwareID_Tips_Thinprep;
variable Arr_LabwareID_Tips_Full[];
variable Arr_LabwareID_Tips_Thinprep[];
variable Arr_LabwareID_Tips_300[];
variable Arr_LabwareID_Tips_Part[];
variable file2_TipScan;
variable file2_PlateOrder;
variable Plate_Quantity_Flag;
variable Separate_No;
dialog dialogHandle_18;
dialog dialogHandle_19;
dialog dialogHandle_20;
dialog dialogHandle_21;
dialog dialogHandle_22;
dialog dialogHandle_23;
dialog dialogHandle_24;
dialog dialogHandle_25;
dialog dialogHandle_26;
dialog dialogHandle_27;
dialog dialogHandle_28;
dialog dialogHandle_29;
dialog dialogHandle_30;
dialog dialogHandle_31;
dialog dialogHandle_32;
dialog dialogHandle_33;
variable StepChk_WB1_Flag;
variable A_Kit_Flag;
variable Seegene_2Reagent50mLx6_1DWP_2PCR_R01_0001;
variable PlateExist_Error_Flag;
variable Seegene_1HHS_1Magnet_1Tip_2Tube_R01_0001;
dialog dialogHandle_34;
dialog dialogHandle_35;
dialog dialogHandle_36;
dialog dialogHandle_37;
dialog dialogHandle_38;
dialog dialogHandle_39;
dialog dialogHandle_40;
dialog dialogHandle_41;
dialog dialogHandle_42;
dialog dialogHandle_43;
dialog dialogHandle_44;
dialog dialogHandle_45;
dialog dialogHandle_46;
dialog dialogHandle_47;
dialog dialogHandle_48;
dialog dialogHandle_49;
dialog dialogHandle_50;
dialog dialogHandle_51;
dialog dialogHandle_52;
dialog dialogHandle_53;
dialog dialogHandle_54;
dialog dialogHandle_55;
dialog dialogHandle_56;
dialog dialogHandle_57;
dialog dialogHandle_58;
dialog dialogHandle_59;
dialog dialogHandle_60;
dialog dialogHandle_61;
dialog dialogHandle_62;
dialog dialogHandle_63;
dialog dialogHandle_64;
dialog dialogHandle_65;
dialog dialogHandle_66;
dialog dialogHandle_67;
dialog dialogHandle_68;
dialog dialogHandle_69;
dialog dialogHandle_70;
dialog dialogHandle_71;
dialog dialogHandle_72;
dialog dialogHandle_73;
dialog dialogHandle_74;
dialog dialogHandle_75;
dialog dialogHandle_76;
dialog dialogHandle_77;
dialog dialogHandle_78;
dialog dialogHandle_79;
dialog dialogHandle_80;
dialog dialogHandle_81;
dialog dialogHandle_82;
dialog dialogHandle_83;
dialog dialogHandle_84;
dialog dialogHandle_85;
dialog dialogHandle_86;
dialog dialogHandle_87;
dialog dialogHandle_88;
dialog dialogHandle_89;
dialog dialogHandle_90;
dialog dialogHandle_91;
dialog dialogHandle_92;
sequence seq_Bead_New_1;
sequence seq_Bead_New_2;
sequence seq_PK_New_1;
sequence seq_PK_New_2;
dialog dialogHandle_93;
dialog dialogHandle_94;
dialog dialogHandle_95;
dialog dialogHandle_96;
dialog dialogHandle_97;
dialog dialogHandle_98;
dialog dialogHandle_99;
dialog dialogHandle_100;
dialog dialogHandle_101;
dialog dialogHandle_102;
dialog dialogHandle_103;
dialog dialogHandle_104;
dialog dialogHandle_105;
dialog dialogHandle_106;
dialog dialogHandle_107;
dialog dialogHandle_108;
dialog dialogHandle_109;
dialog dialogHandle_110;
dialog dialogHandle_111;
dialog dialogHandle_112;
dialog dialogHandle_113;
dialog dialogHandle_114;
dialog dialogHandle_115;
dialog dialogHandle_116;
dialog dialogHandle_117;
dialog dialogHandle_118;
dialog dialogHandle_119;
dialog dialogHandle_120;
dialog dialogHandle_121;
dialog dialogHandle_122;
dialog dialogHandle_123;
dialog dialogHandle_124;
dialog dialogHandle_125;
dialog dialogHandle_126;
dialog dialogHandle_127;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable fileD_IC2;
    private variable fileD_IC3;
    private variable fileD_IC4;
    private variable fileD_IC5;
    private variable fileD_IC6;
    private variable Use_IC1;
    private variable Use_IC2;
    private variable TipsStillOn;
    private variable Use_IC3;
    private variable Use_IC4;
    private variable Use_IC5;
    private variable Use_IC6;
    private variable fileD_IC1;
    private file fileD;
    private variable loopCounter14;
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslFalse);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 1);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIP_PRESENT_CHECK::_InitLibrary();
    EXTRACTION_STARLET_V6::_InitLibrary();
    PCR_SET_UP_STARLET_V6::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("******************************************** Launcher V6.00.000 ******************************************\nDate:  2017/12/29\nModified : OSJ, JNY, KIG, HSY, CJH"));
    MECC::TraceComment(Translate("******************************************** Launcher V6.00.000.023 ******************************************\nDate:  2018/02/28 \nModified : CJH, KIG"));
    MECC::TraceComment(Translate("******************************************** Launcher RUO V6.00.001 ******************************************\nDate:  2018/03/30\nModified : KIG"));
    MECC::TraceComment(Translate("******************************************** Launcher V6.00.001 ******************************************\nDate:  2018/04/20\nModified : HSY"));
    MECC::TraceComment(Translate("******************************************** Launcher V6.00.005 ******************************************\nDate:  2018/10/30\nModified : CJH, HSY, KIG"));
    MECC::TraceComment(Translate("******************************************** Launcher V6.00.006 ******************************************\nDate:  2018/11/23\nModified : CJH"));
    MECC::TraceComment(Translate("******************************************** Launcher V6.00.007 ******************************************\nDate:  2018/12/28\nModified : HSY"));
    MECC::TraceComment(Translate("******************************************** Launcher V6.01.000 ******************************************\nDate:  2019/04/30\nModified : JEH, CJH, HSY"));
    MECC::TraceComment(Translate("******************************************** Launcher V6.02.000 ******************************************\nDate:  2019/10/14\nModified : CJH"));
    MECC::TraceComment(Translate("******************************************** Launcher V6.02.001 ******************************************\nDate:  2019/11/29\nModified : JNY"));
    MECC::TraceComment(Translate("******************************************** SARS-CoV-2 V1.00.000 ******************************************\nDate:  2020/09/25\nModified : CJH, GHJ, HJY, YMH"));
    MECC::TraceComment(Translate("******************************************** SARS-CoV-2 V1.00.000 ******************************************\nDate:  2020/10/30\nModified : HSY"));
    MECC::TraceComment(Translate("******************************************** Launcher V6.02.006 ******************************************\nDate:  2020/10/30, 2021/01/15\nModified : CJH, GHJ, YMH, JNY, HJY"));
    MECC::TraceComment(Translate("******************************************** Launcher V6.02.007 ******************************************\nDate:  2021/03/15\nModified : GHJ, HJY"));
    MECC::TraceComment(Translate("******************************************** Launcher V6.02.008 ******************************************\nDate:  2021/06/15\nModified : CJH"));
    MECC::TraceComment(Translate("******************************************** Launcher V6.03.000 ******************************************\nDate:  2021/09/10\nModified : CJH, HJY, YMH, GHJ"));
    MECC::TraceComment(Translate("+++++++++++++++++++++++++++++++++++++++++++\n+++++++++++++++ Initialize STARlet +++++++++++++++\n+++++++++++++++++++++++++++++++++++++++++++"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    Tip_Carrier_1mL = Translate("TIP_CAR_480BC_HTF_A00_0001");
    Tip_Carrier_1mL_Thinprep = Translate("Seegene_1HHS_1Magnet_1Tip_2Tube_R01_0001");
    Tip_Carrier_300uL = Translate("TIP_CAR_480BC_HTF_A00_0002");
    SMP_CAR_32_001 = Translate("SMP_CAR_32_12x100_A00_0001");
    SMP_CAR_32_002 = Translate("SMP_CAR_32_12x100_A00_0002");
    SMP_CAR_32_003 = Translate("SMP_CAR_32_12x100_A00_0003");
    SMP_CAR_24_001 = Translate("SMP_CAR_24_15x100_A00_0001");
    SMP_CAR_24_002 = Translate("SMP_CAR_24_15x100_A00_0002");
    SMP_CAR_24_003 = Translate("SMP_CAR_24_15x100_A00_0003");
    SMP_CAR_24_004 = Translate("SMP_CAR_24_15x100_A00_0004");
    SMP_CAR_12_Thinprep_001 = Translate("SMP_CAR_12_Thinprep_Load_0001");
    SMP_CAR_12_Thinprep_002 = Translate("SMP_CAR_12_Thinprep_Load_0002");
    SMP_CAR_12_Thinprep_003 = Translate("SMP_CAR_12_Thinprep_Load_0003");
    SMP_CAR_12_Thinprep_004 = Translate("SMP_CAR_12_Thinprep_Load_0004");
    SMP_CAR_12_Thinprep_005 = Translate("SMP_CAR_12_Thinprep_Load_0005");
    SMP_CAR_12_Thinprep_006 = Translate("SMP_CAR_12_Thinprep_Load_0006");
    SMP_CAR_12_Thinprep_007 = Translate("SMP_CAR_12_Thinprep_Load_0007");
    SMP_CAR_12_Thinprep_008 = Translate("SMP_CAR_12_Thinprep_Load_0008");
    Seegene_1HHS_1Magnet_1Tip_2Tube_R01_0001 = Translate("Seegene_1HHS_1Magnet_1Tip_2Tube_R01_0001");
    Seegene_2Reagent50mLx6_1DWP_2PCR_R01_0001 = Translate("Seegene_2Reagent50mLx6_1DWP_2PCR_R01_0001");
    MECC::TraceComment(Translate("******************** Check if STARlet is in Simulation Mode ***********************"));
    file1_SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
    file1_User = 0;
    Clot_Occurs = 0;
    fileB.AddField("No#", fileB_No_, hslInteger);
    fileB.AddField("Urine", fileB_Urine, hslString, 255);
    fileB.AddField("Barcode", fileB_Barcode, hslString, 255);
    fileB.AddField("Product1", fileB_PRODUCT_1, hslString, 255);
    fileB.AddField("Product2", fileB_PRODUCT_2, hslString, 255);
    fileB.AddField("Product3", fileB_PRODUCT_3, hslString, 255);
    fileB.AddField("Product4", fileB_PRODUCT_4, hslString, 255);
    fileB.AddField("Product5", fileB_PRODUCT_5, hslString, 255);
    fileB.AddField("Product6", fileB_PRODUCT_6, hslString, 255);
    fileB.AddField("Product7", fileB_PRODUCT_7, hslString, 255);
    fileB.AddField("Product8", fileB_PRODUCT_8, hslString, 255);
    fileB.AddField("Product9", fileB_PRODUCT_9, hslString, 255);
    fileB.AddField("Product10", fileB_PRODUCT_10, hslString, 255);
    fileB.AddField("Product11", fileB_PRODUCT_11, hslString, 255);
    fileB.AddField("Product12", fileB_PRODUCT_12, hslString, 255);
    fileB.AddField("1_5ml", fileB_1_5ml, hslString, 255);
    fileB.AddField("12mm", fileB_12mm, hslString, 255);
    fileB.AddField("16mm", fileB_16mm, hslString, 255);
    fileB.AddField("Thinprep", fileB_Thinprep, hslString, 255);
    if( 0 == fileB.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
    }
    {
      loopCounter5 = 0;
      while (
         (fileB.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == fileB.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Sample_Cnt_Flag = 0;
        if (fileB_PRODUCT_1 == "true")
        {
          Sample_Cnt_PRODUCT_001 = Sample_Cnt_PRODUCT_001 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_2 == "true")
        {
          Sample_Cnt_PRODUCT_002 = Sample_Cnt_PRODUCT_002 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_3 == "true")
        {
          Sample_Cnt_PRODUCT_003 = Sample_Cnt_PRODUCT_003 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_4 == "true")
        {
          Sample_Cnt_PRODUCT_004 = Sample_Cnt_PRODUCT_004 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_5 == "true")
        {
          Sample_Cnt_PRODUCT_005 = Sample_Cnt_PRODUCT_005 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_6 == "true")
        {
          Sample_Cnt_PRODUCT_006 = Sample_Cnt_PRODUCT_006 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_7 == "true")
        {
          Sample_Cnt_PRODUCT_007 = Sample_Cnt_PRODUCT_007 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_8 == "true")
        {
          Sample_Cnt_PRODUCT_008 = Sample_Cnt_PRODUCT_008 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_9 == "true")
        {
          Sample_Cnt_PRODUCT_009 = Sample_Cnt_PRODUCT_009 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_10 == "true")
        {
          Sample_Cnt_PRODUCT_010 = Sample_Cnt_PRODUCT_010 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_11 == "true")
        {
          Sample_Cnt_PRODUCT_011 = Sample_Cnt_PRODUCT_011 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_12 == "true")
        {
          Sample_Cnt_PRODUCT_012 = Sample_Cnt_PRODUCT_012 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (Sample_Cnt_Flag != 0)
        {
          Sample_Cnt = Sample_Cnt + 1;
        }
      }
    }
    if( 0 != fileB.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    fileB.RemoveFields();
    Sample_Cnt_Ini = Sample_Cnt;
    file2.AddField("Step", file2_Step, hslString, 255);
    file2.AddField("Product_No", file2_Product_No, hslString, 255);
    file2.AddField("Rack", file2_Rack, hslString, 255);
    file2.AddField("Tube", file2_Tube, hslString, 255);
    file2.AddField("Plate", file2_Plate, hslString, 255);
    file2.AddField("Product_Name", file2_Product_Name, hslString, 255);
    file2.AddField("Extraction_Kit", file2_Extraction_Kit, hslInteger);
    file2.AddField("PC_No", file2_PC_No, hslInteger);
    file2.AddField("NC_No", file2_NC_No, hslInteger);
    file2.AddField("SD_No", file2_SD_No, hslInteger);
    file2.AddField("WTC_No", file2_WTC_No, hslInteger);
    file2.AddField("IC_No", file2_IC_No, hslInteger);
    file2.AddField("Random_Access", Random_Access, hslInteger);
    file2.AddField("Extraction_Cartridge_Count", STARMag_Remain, hslInteger);
    file2.AddField("PCR_Cartridge_Count", file2_PCR_Remain, hslInteger);
    file2.AddField("Clot", file2_Clot, hslInteger);
    file2.AddField("PCR_Barcode", file2_PCR_Barcode, hslInteger);
    file2.AddField("Remaining_PCR", PCR_Remain_PRODUCT_001_1st_Tube, hslInteger);
    file2.AddField("Code", file2_Code, hslString, 255);
    file2.AddField("PC_NC", file2_PC_NC, hslInteger);
    file2.AddField("iSwap", iSwap, hslInteger);
    file2.AddField("Sample_Unload", file2_Sample_Unload, hslInteger);
    file2.AddField("Carrier_Unload", file2_Carrier_Unload, hslInteger);
    file2.AddField("BarcodeDWP", file2_BarcodeDWP, hslInteger);
    file2.AddField("BarcodePlate", file2_BarcodePlate, hslInteger);
    file2.AddField("TipScan", file2_TipScan, hslInteger);
    file2.AddField("PlateInstallOrder", file2_PlateOrder, hslInteger);
    if( 0 == file2.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "Setting$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
    }
    if( 0 == file2.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != file2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file2.RemoveFields();
    MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++\n+++++++++++++++ Experiment Information and Sample Count +++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    file2_Set_No = 1;
    Use_BLB = 0;
    if (file2_Product_No == "PRODUCT_ANY_001")
    {
      file2_Set_No = 2;
    }
    if (file2_Product_No == "PRODUCT_ANY_006")
    {
      file2_Set_No = 2;
    }
    if (file2_Product_No == "PRODUCT_ANY_017")
    {
      file2_Set_No = 2;
    }
    if (file2_Product_No == "PRODUCT_ANY_010")
    {
      file2_Set_No = 2;
      Use_BLB = 1;
    }
    if (file2_Product_No == "PRODUCT_ALL_029")
    {
      file2_Set_No = 2;
    }
    if (file2_Product_No == "PRODUCT_ALL_030")
    {
      file2_Set_No = 2;
    }
    if (file2_Product_No == "PRODUCT_ALL_031")
    {
      file2_Set_No = 3;
    }
    PCR_Remain_PRODUCT_001 = file2_PCR_Remain;
    Trace ("SimOn = ", file1_SimOn);
    Trace ("Step = ", file2_Step);
    Trace ("Extraction Kit = ", file2_Extraction_Kit);
    Trace ("Rack Type = ", file2_Rack);
    Trace ("Tube Type = ", file2_Tube);
    Trace ("Plate = ", file2_Plate);
    Trace ("Random_Access = ", Random_Access);
    Trace ("Clot Error Handling On/Off = ", file2_Clot);
    Trace ("PCR Barcode On/off = ", file2_PCR_Barcode);
    Trace ("PC_NC Position = ", file2_PC_NC);
    Trace ("User Code = ", file2_Code);
    Trace ("iSwap = ", iSwap);
    Trace ("Sample_Unload = ", file2_Sample_Unload);
    Trace ("Carrier_Unload = ", file2_Carrier_Unload);
    Trace ("BarcodeDWP = ", file2_BarcodeDWP);
    Trace ("BarcodePlate = ", file2_BarcodePlate);
    Trace ("TipScan = ", file2_TipScan);
    Trace ("PlateOrder =", file2_PlateOrder);
    MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    file2_PPC_No = 0;
    file2_PPC_No = (file2_WTC_No + file2_SD_No + file2_PC_No);
    Trace ("Product = ", file2_Product_No);
    Trace ("Product Name = ", file2_Product_Name);
    Trace ("NC No = ", file2_NC_No);
    Trace ("WTC_No = ", file2_WTC_No);
    Trace ("SD_No = ", file2_SD_No);
    Trace ("PC_No = ", file2_PC_No);
    Trace ("PPC_No = ", file2_PPC_No);
    Trace ("Set_No = ", file2_Set_No);
    Trace ("PCR_Remain_PRODUCT_001 = ", PCR_Remain_PRODUCT_001);
    Trace ("Remaining_2X_Vol = ", file2_Remaining_2X_Vol);
    MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    if (Sample_Cnt_PRODUCT_002 != 0)
    {
      file7.AddField("Step", file7_Step, hslString, 255);
      file7.AddField("Product_No", file7_Product_No, hslString, 255);
      file7.AddField("Rack", file7_Rack, hslString, 255);
      file7.AddField("Tube", file7_Tube, hslString, 255);
      file7.AddField("Plate", file7_Plate, hslString, 255);
      file7.AddField("Product_Name", file7_Product_Name, hslString, 255);
      file7.AddField("Extraction_Kit", file7_Extraction_Kit, hslInteger);
      file7.AddField("PC_No", file7_PC_No, hslInteger);
      file7.AddField("NC_No", file7_NC_No, hslInteger);
      file7.AddField("SD_No", file7_SD_No, hslInteger);
      file7.AddField("WTC_No", file7_WTC_No, hslInteger);
      file7.AddField("IC_No", file7_IC_No, hslInteger);
      file7.AddField("Remaining_PCR", PCR_Remain_PRODUCT_002_1st_Tube, hslInteger);
      file7.AddField("PCR_Cartridge_Count", file7_PCR_Remain, hslInteger);
      if( 0 == file7.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 2;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file7.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file7.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file7.RemoveFields();
      file7_Set_No = 1;
      if (file7_Product_No == "PRODUCT_ANY_001")
      {
        file7_Set_No = 2;
      }
      if (file7_Product_No == "PRODUCT_ANY_006")
      {
        file7_Set_No = 2;
      }
      if (file7_Product_No == "PRODUCT_ANY_017")
      {
        file7_Set_No = 2;
      }
      if (file7_Product_No == "PRODUCT_ANY_010")
      {
        file7_Set_No = 2;
        Use_BLB = 1;
      }
      if (file7_Product_No == "PRODUCT_ALL_029")
      {
        file7_Set_No = 2;
      }
      if (file7_Product_No == "PRODUCT_ALL_030")
      {
        file7_Set_No = 2;
      }
      if (file7_Product_No == "PRODUCT_ALL_031")
      {
        file7_Set_No = 3;
      }
      PCR_Remain_PRODUCT_002 = file7_PCR_Remain;
      file7_PPC_No = 0;
      file7_PPC_No = (file7_WTC_No + file7_SD_No + file7_PC_No);
      Trace ("Product = ", file7_Product_No);
      Trace ("Product Name = ", file7_Product_Name);
      Trace ("NC_No = ", file7_NC_No);
      Trace ("WTC_No = ", file7_WTC_No);
      Trace ("SD_No = ", file7_SD_No);
      Trace ("PC_No = ", file7_PC_No);
      Trace ("PPC_No = ", file7_PPC_No);
      Trace ("Set_No = ", file7_Set_No);
      Trace ("PCR_Remain_PRODUCT_002 = ", PCR_Remain_PRODUCT_002);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_003 != 0)
    {
      file9.AddField("Step", file9_Step, hslString, 255);
      file9.AddField("Product_No", file9_Product_No, hslString, 255);
      file9.AddField("Rack", file9_Rack, hslString, 255);
      file9.AddField("Tube", file9_Tube, hslString, 255);
      file9.AddField("Plate", file9_Plate, hslString, 255);
      file9.AddField("Product_Name", file9_Product_Name, hslString, 255);
      file9.AddField("Extraction_Kit", file9_Extraction_Kit, hslInteger);
      file9.AddField("PC_No", file9_PC_No, hslInteger);
      file9.AddField("NC_No", file9_NC_No, hslInteger);
      file9.AddField("SD_No", file9_SD_No, hslInteger);
      file9.AddField("WTC_No", file9_WTC_No, hslInteger);
      file9.AddField("IC_No", file9_IC_No, hslInteger);
      file9.AddField("Remaining_PCR", PCR_Remain_PRODUCT_003_1st_Tube, hslInteger);
      file9.AddField("PCR_Cartridge_Count", file9_PCR_Remain, hslInteger);
      if( 0 == file9.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 3;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file9.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file9.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file9.RemoveFields();
      file9_Set_No = 1;
      if (file9_Product_No == "PRODUCT_ANY_001")
      {
        file9_Set_No = 2;
      }
      if (file9_Product_No == "PRODUCT_ANY_006")
      {
        file9_Set_No = 2;
      }
      if (file9_Product_No == "PRODUCT_ANY_017")
      {
        file9_Set_No = 2;
      }
      if (file9_Product_No == "PRODUCT_ANY_010")
      {
        file9_Set_No = 2;
        Use_BLB = 1;
      }
      if (file9_Product_No == "PRODUCT_ALL_029")
      {
        file9_Set_No = 2;
      }
      if (file9_Product_No == "PRODUCT_ALL_030")
      {
        file9_Set_No = 2;
      }
      if (file9_Product_No == "PRODUCT_ALL_031")
      {
        file9_Set_No = 3;
      }
      PCR_Remain_PRODUCT_003 = file9_PCR_Remain;
      file9_PPC_No = 0;
      file9_PPC_No = (file9_WTC_No + file9_SD_No + file9_PC_No);
      Trace ("Product = ", file9_Product_No);
      Trace ("Product Name = ", file9_Product_Name);
      Trace ("NC_No = ", file9_NC_No);
      Trace ("WTC_No = ", file9_WTC_No);
      Trace ("SD_No = ", file9_SD_No);
      Trace ("PC_No = ", file9_PC_No);
      Trace ("PPC_No = ", file9_PPC_No);
      Trace ("Set_No = ", file9_Set_No);
      Trace ("PCR_Remain_PRODUCT_003 = ", PCR_Remain_PRODUCT_003);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_004 != 0)
    {
      file11.AddField("Step", file11_Step, hslString, 255);
      file11.AddField("Product_No", file11_Product_No, hslString, 255);
      file11.AddField("Rack", file11_Rack, hslString, 255);
      file11.AddField("Tube", file11_Tube, hslString, 255);
      file11.AddField("Plate", file11_Plate, hslString, 255);
      file11.AddField("Product_Name", file11_Product_Name, hslString, 255);
      file11.AddField("Extraction_Kit", file11_Extraction_Kit, hslInteger);
      file11.AddField("PC_No", file11_PC_No, hslInteger);
      file11.AddField("NC_No", file11_NC_No, hslInteger);
      file11.AddField("SD_No", file11_SD_No, hslInteger);
      file11.AddField("WTC_No", file11_WTC_No, hslInteger);
      file11.AddField("IC_No", file11_IC_No, hslInteger);
      file11.AddField("Remaining_PCR", PCR_Remain_PRODUCT_004_1st_Tube, hslInteger);
      file11.AddField("PCR_Cartridge_Count", file11_PCR_Remain, hslInteger);
      if( 0 == file11.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 4;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file11.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file11.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file11.RemoveFields();
      file11_Set_No = 1;
      if (file11_Product_No == "PRODUCT_ANY_001")
      {
        file11_Set_No = 2;
      }
      if (file11_Product_No == "PRODUCT_ANY_006")
      {
        file11_Set_No = 2;
      }
      if (file11_Product_No == "PRODUCT_ANY_017")
      {
        file11_Set_No = 2;
      }
      if (file11_Product_No == "PRODUCT_ANY_010")
      {
        file11_Set_No = 2;
        Use_BLB = 1;
      }
      if (file11_Product_No == "PRODUCT_ALL_029")
      {
        file11_Set_No = 2;
      }
      if (file11_Product_No == "PRODUCT_ALL_030")
      {
        file11_Set_No = 2;
      }
      if (file11_Product_No == "PRODUCT_ALL_031")
      {
        file11_Set_No = 3;
      }
      PCR_Remain_PRODUCT_004 = file11_PCR_Remain;
      file11_PPC_No = 0;
      file11_PPC_No = (file11_WTC_No + file11_SD_No + file11_PC_No);
      Trace ("Product = ", file11_Product_No);
      Trace ("Product Name = ", file11_Product_Name);
      Trace ("NC_No = ", file11_NC_No);
      Trace ("WTC_No = ", file11_WTC_No);
      Trace ("SD_No = ", file11_SD_No);
      Trace ("PC_No = ", file11_PC_No);
      Trace ("PPC_No = ", file11_PPC_No);
      Trace ("Set_No = ", file11_Set_No);
      Trace ("PCR_Remain_PRODUCT_004 = ", PCR_Remain_PRODUCT_004);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_005 != 0)
    {
      file13.AddField("Step", file13_Step, hslString, 255);
      file13.AddField("Product_No", file13_Product_No, hslString, 255);
      file13.AddField("Rack", file13_Rack, hslString, 255);
      file13.AddField("Tube", file13_Tube, hslString, 255);
      file13.AddField("Plate", file13_Plate, hslString, 255);
      file13.AddField("Product_Name", file13_Product_Name, hslString, 255);
      file13.AddField("Extraction_Kit", file13_Extraction_Kit, hslInteger);
      file13.AddField("PC_No", file13_PC_No, hslInteger);
      file13.AddField("NC_No", file13_NC_No, hslInteger);
      file13.AddField("SD_No", file13_SD_No, hslInteger);
      file13.AddField("WTC_No", file13_WTC_No, hslInteger);
      file13.AddField("IC_No", file13_IC_No, hslInteger);
      file13.AddField("Remaining_PCR", PCR_Remain_PRODUCT_005_1st_Tube, hslInteger);
      file13.AddField("PCR_Cartridge_Count", file13_PCR_Remain, hslInteger);
      if( 0 == file13.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 5;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file13.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file13.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file13.RemoveFields();
      file13_Set_No = 1;
      if (file13_Product_No == "PRODUCT_ANY_001")
      {
        file13_Set_No = 2;
      }
      if (file13_Product_No == "PRODUCT_ANY_006")
      {
        file13_Set_No = 2;
      }
      if (file13_Product_No == "PRODUCT_ANY_017")
      {
        file13_Set_No = 2;
      }
      if (file13_Product_No == "PRODUCT_ANY_010")
      {
        file13_Set_No = 2;
        Use_BLB = 1;
      }
      if (file13_Product_No == "PRODUCT_ALL_029")
      {
        file13_Set_No = 2;
      }
      if (file13_Product_No == "PRODUCT_ALL_030")
      {
        file13_Set_No = 2;
      }
      if (file13_Product_No == "PRODUCT_ALL_031")
      {
        file13_Set_No = 3;
      }
      PCR_Remain_PRODUCT_005 = file13_PCR_Remain;
      Trace ("Product = ", file13_Product_No);
      Trace ("Product Name = ", file13_Product_Name);
      Trace ("NC_No = ", file13_NC_No);
      Trace ("WTC_No = ", file13_WTC_No);
      Trace ("SD_No = ", file13_SD_No);
      Trace ("PC_No = ", file13_PC_No);
      Trace ("Set_No = ", file13_Set_No);
      Trace ("PCR_Remain_PRODUCT_005 = ", PCR_Remain_PRODUCT_005);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_006 != 0)
    {
      file15.AddField("Step", file15_Step, hslString, 255);
      file15.AddField("Product_No", file15_Product_No, hslString, 255);
      file15.AddField("Rack", file15_Rack, hslString, 255);
      file15.AddField("Tube", file15_Tube, hslString, 255);
      file15.AddField("Plate", file15_Plate, hslString, 255);
      file15.AddField("Product_Name", file15_Product_Name, hslString, 255);
      file15.AddField("Extraction_Kit", file15_Extraction_Kit, hslInteger);
      file15.AddField("PC_No", file15_PC_No, hslInteger);
      file15.AddField("NC_No", file15_NC_No, hslInteger);
      file15.AddField("SD_No", file15_SD_No, hslInteger);
      file15.AddField("WTC_No", file15_WTC_No, hslInteger);
      file15.AddField("IC_No", file15_IC_No, hslInteger);
      file15.AddField("Remaining_PCR", PCR_Remain_PRODUCT_006_1st_Tube, hslInteger);
      file15.AddField("PCR_Cartridge_Count", file15_PCR_Remain, hslInteger);
      if( 0 == file15.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 6;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file15.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file15.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file15.RemoveFields();
      file15_Set_No = 1;
      if (file15_Product_No == "PRODUCT_ANY_001")
      {
        file15_Set_No = 2;
      }
      if (file15_Product_No == "PRODUCT_ANY_006")
      {
        file15_Set_No = 2;
      }
      if (file15_Product_No == "PRODUCT_ANY_017")
      {
        file15_Set_No = 2;
      }
      if (file15_Product_No == "PRODUCT_ANY_010")
      {
        file15_Set_No = 2;
        Use_BLB = 1;
      }
      if (file15_Product_No == "PRODUCT_ALL_029")
      {
        file15_Set_No = 2;
      }
      if (file15_Product_No == "PRODUCT_ALL_030")
      {
        file15_Set_No = 2;
      }
      if (file15_Product_No == "PRODUCT_ALL_031")
      {
        file15_Set_No = 3;
      }
      PCR_Remain_PRODUCT_006 = file15_PCR_Remain;
      Trace ("Product = ", file15_Product_No);
      Trace ("Product Name = ", file15_Product_Name);
      Trace ("NC_No = ", file15_NC_No);
      Trace ("WTC_No = ", file15_WTC_No);
      Trace ("SD_No = ", file15_SD_No);
      Trace ("PC_No = ", file15_PC_No);
      Trace ("Set_No = ", file15_Set_No);
      Trace ("PCR_Remain_PRODUCT_006 = ", PCR_Remain_PRODUCT_006);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_007 != 0)
    {
      file17.AddField("Step", file17_Step, hslString, 255);
      file17.AddField("Product_No", file17_Product_No, hslString, 255);
      file17.AddField("Rack", file17_Rack, hslString, 255);
      file17.AddField("Tube", file17_Tube, hslString, 255);
      file17.AddField("Plate", file17_Plate, hslString, 255);
      file17.AddField("Product_Name", file17_Product_Name, hslString, 255);
      file17.AddField("Extraction_Kit", file17_Extraction_Kit, hslInteger);
      file17.AddField("PC_No", file17_PC_No, hslInteger);
      file17.AddField("NC_No", file17_NC_No, hslInteger);
      file17.AddField("SD_No", file17_SD_No, hslInteger);
      file17.AddField("WTC_No", file17_WTC_No, hslInteger);
      file17.AddField("IC_No", file17_IC_No, hslInteger);
      file17.AddField("Remaining_PCR", PCR_Remain_PRODUCT_007_1st_Tube, hslInteger);
      file17.AddField("PCR_Cartridge_Count", file17_PCR_Remain, hslInteger);
      if( 0 == file17.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 7;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file17.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file17.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file17.RemoveFields();
      file17_Set_No = 1;
      if (file17_Product_No == "PRODUCT_ANY_001")
      {
        file17_Set_No = 2;
      }
      if (file17_Product_No == "PRODUCT_ANY_006")
      {
        file17_Set_No = 2;
      }
      if (file17_Product_No == "PRODUCT_ANY_017")
      {
        file17_Set_No = 2;
      }
      if (file17_Product_No == "PRODUCT_ANY_010")
      {
        file17_Set_No = 2;
        Use_BLB = 1;
      }
      if (file17_Product_No == "PRODUCT_ALL_029")
      {
        file17_Set_No = 2;
      }
      if (file17_Product_No == "PRODUCT_ALL_030")
      {
        file17_Set_No = 2;
      }
      if (file17_Product_No == "PRODUCT_ALL_031")
      {
        file17_Set_No = 3;
      }
      PCR_Remain_PRODUCT_007 = file17_PCR_Remain;
      Trace ("Product = ", file17_Product_No);
      Trace ("Product Name = ", file17_Product_Name);
      Trace ("NC_No = ", file17_NC_No);
      Trace ("WTC_No = ", file17_WTC_No);
      Trace ("SD_No = ", file17_SD_No);
      Trace ("PC_No = ", file17_PC_No);
      Trace ("Set_No = ", file17_Set_No);
      Trace ("PCR_Remain_PRODUCT_007 = ", PCR_Remain_PRODUCT_007);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_008 != 0)
    {
      file19.AddField("Step", file19_Step, hslString, 255);
      file19.AddField("Product_No", file19_Product_No, hslString, 255);
      file19.AddField("Rack", file19_Rack, hslString, 255);
      file19.AddField("Tube", file19_Tube, hslString, 255);
      file19.AddField("Plate", file19_Plate, hslString, 255);
      file19.AddField("Product_Name", file19_Product_Name, hslString, 255);
      file19.AddField("Extraction_Kit", file19_Extraction_Kit, hslInteger);
      file19.AddField("PC_No", file19_PC_No, hslInteger);
      file19.AddField("NC_No", file19_NC_No, hslInteger);
      file19.AddField("SD_No", file19_SD_No, hslInteger);
      file19.AddField("WTC_No", file19_WTC_No, hslInteger);
      file19.AddField("IC_No", file19_IC_No, hslInteger);
      file19.AddField("Remaining_PCR", PCR_Remain_PRODUCT_008_1st_Tube, hslInteger);
      file19.AddField("PCR_Cartridge_Count", file19_PCR_Remain, hslInteger);
      if( 0 == file19.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 8;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file19.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file19.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file19.RemoveFields();
      file19_Set_No = 1;
      if (file19_Product_No == "PRODUCT_ANY_001")
      {
        file19_Set_No = 2;
      }
      if (file19_Product_No == "PRODUCT_ANY_006")
      {
        file19_Set_No = 2;
      }
      if (file19_Product_No == "PRODUCT_ANY_017")
      {
        file19_Set_No = 2;
      }
      if (file19_Product_No == "PRODUCT_ANY_010")
      {
        file19_Set_No = 2;
        Use_BLB = 1;
      }
      if (file19_Product_No == "PRODUCT_ALL_029")
      {
        file19_Set_No = 2;
      }
      if (file19_Product_No == "PRODUCT_ALL_030")
      {
        file19_Set_No = 2;
      }
      if (file19_Product_No == "PRODUCT_ALL_031")
      {
        file19_Set_No = 3;
      }
      PCR_Remain_PRODUCT_008 = file19_PCR_Remain;
      Trace ("Product = ", file19_Product_No);
      Trace ("Product Name = ", file19_Product_Name);
      Trace ("NC_No = ", file19_NC_No);
      Trace ("WTC_No = ", file19_WTC_No);
      Trace ("SD_No = ", file19_SD_No);
      Trace ("PC_No = ", file19_PC_No);
      Trace ("Set_No = ", file19_Set_No);
      Trace ("PCR_Remain_PRODUCT_008 = ", PCR_Remain_PRODUCT_008);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_009 != 0)
    {
      file21.AddField("Step", file21_Step, hslString, 255);
      file21.AddField("Product_No", file21_Product_No, hslString, 255);
      file21.AddField("Rack", file21_Rack, hslString, 255);
      file21.AddField("Tube", file21_Tube, hslString, 255);
      file21.AddField("Plate", file21_Plate, hslString, 255);
      file21.AddField("Product_Name", file21_Product_Name, hslString, 255);
      file21.AddField("Extraction_Kit", file21_Extraction_Kit, hslInteger);
      file21.AddField("PC_No", file21_PC_No, hslInteger);
      file21.AddField("NC_No", file21_NC_No, hslInteger);
      file21.AddField("SD_No", file21_SD_No, hslInteger);
      file21.AddField("WTC_No", file21_WTC_No, hslInteger);
      file21.AddField("IC_No", file21_IC_No, hslInteger);
      file21.AddField("Remaining_PCR", PCR_Remain_PRODUCT_009_1st_Tube, hslInteger);
      file21.AddField("PCR_Cartridge_Count", file21_PCR_Remain, hslInteger);
      if( 0 == file21.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 9;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file21.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file21.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file21.RemoveFields();
      file21_Set_No = 1;
      if (file21_Product_No == "PRODUCT_ANY_001")
      {
        file21_Set_No = 2;
      }
      if (file21_Product_No == "PRODUCT_ANY_006")
      {
        file21_Set_No = 2;
      }
      if (file21_Product_No == "PRODUCT_ANY_017")
      {
        file21_Set_No = 2;
      }
      if (file21_Product_No == "PRODUCT_ANY_010")
      {
        file21_Set_No = 2;
        Use_BLB = 1;
      }
      if (file21_Product_No == "PRODUCT_ALL_029")
      {
        file21_Set_No = 2;
      }
      if (file21_Product_No == "PRODUCT_ALL_030")
      {
        file21_Set_No = 2;
      }
      if (file21_Product_No == "PRODUCT_ALL_031")
      {
        file21_Set_No = 3;
      }
      PCR_Remain_PRODUCT_009 = file21_PCR_Remain;
      Trace ("Product = ", file21_Product_No);
      Trace ("Product Name = ", file21_Product_Name);
      Trace ("NC_No = ", file21_NC_No);
      Trace ("WTC_No = ", file21_WTC_No);
      Trace ("SD_No = ", file21_SD_No);
      Trace ("PC_No = ", file21_PC_No);
      Trace ("Set_No = ", file21_Set_No);
      Trace ("PCR_Remain_PRODUCT_009 = ", PCR_Remain_PRODUCT_009);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_010 != 0)
    {
      file23.AddField("Step", file23_Step, hslString, 255);
      file23.AddField("Product_No", file23_Product_No, hslString, 255);
      file23.AddField("Rack", file23_Rack, hslString, 255);
      file23.AddField("Tube", file23_Tube, hslString, 255);
      file23.AddField("Plate", file23_Plate, hslString, 255);
      file23.AddField("Product_Name", file23_Product_Name, hslString, 255);
      file23.AddField("Extraction_Kit", file23_Extraction_Kit, hslInteger);
      file23.AddField("PC_No", file23_PC_No, hslInteger);
      file23.AddField("NC_No", file23_NC_No, hslInteger);
      file23.AddField("SD_No", file23_SD_No, hslInteger);
      file23.AddField("WTC_No", file23_WTC_No, hslInteger);
      file23.AddField("IC_No", file23_IC_No, hslInteger);
      file23.AddField("Remaining_PCR", PCR_Remain_PRODUCT_010_1st_Tube, hslInteger);
      file23.AddField("PCR_Cartridge_Count", file23_PCR_Remain, hslInteger);
      if( 0 == file23.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 10;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file23.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file23.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file23.RemoveFields();
      file23_Set_No = 1;
      if (file23_Product_No == "PRODUCT_ANY_001")
      {
        file23_Set_No = 2;
      }
      if (file23_Product_No == "PRODUCT_ANY_006")
      {
        file23_Set_No = 2;
      }
      if (file23_Product_No == "PRODUCT_ANY_017")
      {
        file23_Set_No = 2;
      }
      if (file23_Product_No == "PRODUCT_ANY_010")
      {
        file23_Set_No = 2;
        Use_BLB = 1;
      }
      if (file23_Product_No == "PRODUCT_ALL_029")
      {
        file23_Set_No = 2;
      }
      if (file23_Product_No == "PRODUCT_ALL_030")
      {
        file23_Set_No = 2;
      }
      if (file23_Product_No == "PRODUCT_ALL_031")
      {
        file23_Set_No = 3;
      }
      PCR_Remain_PRODUCT_010 = file23_PCR_Remain;
      Trace ("Product = ", file23_Product_No);
      Trace ("Product Name = ", file23_Product_Name);
      Trace ("NC_No = ", file23_NC_No);
      Trace ("WTC_No = ", file23_WTC_No);
      Trace ("SD_No = ", file23_SD_No);
      Trace ("PC_No = ", file23_PC_No);
      Trace ("Set_No = ", file23_Set_No);
      Trace ("PCR_Remain_PRODUCT_010 = ", PCR_Remain_PRODUCT_010);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_011 != 0)
    {
      file25.AddField("Step", file25_Step, hslString, 255);
      file25.AddField("Product_No", file25_Product_No, hslString, 255);
      file25.AddField("Rack", file25_Rack, hslString, 255);
      file25.AddField("Tube", file25_Tube, hslString, 255);
      file25.AddField("Plate", file25_Plate, hslString, 255);
      file25.AddField("Product_Name", file25_Product_Name, hslString, 255);
      file25.AddField("Extraction_Kit", file25_Extraction_Kit, hslInteger);
      file25.AddField("PC_No", file25_PC_No, hslInteger);
      file25.AddField("NC_No", file25_NC_No, hslInteger);
      file25.AddField("SD_No", file25_SD_No, hslInteger);
      file25.AddField("WTC_No", file25_WTC_No, hslInteger);
      file25.AddField("IC_No", file25_IC_No, hslInteger);
      file25.AddField("Remaining_PCR", PCR_Remain_PRODUCT_011_1st_Tube, hslInteger);
      file25.AddField("PCR_Cartridge_Count", file25_PCR_Remain, hslInteger);
      if( 0 == file25.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 11;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file25.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file25.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file25.RemoveFields();
      file25_Set_No = 1;
      if (file25_Product_No == "PRODUCT_ANY_001")
      {
        file25_Set_No = 2;
      }
      if (file25_Product_No == "PRODUCT_ANY_006")
      {
        file25_Set_No = 2;
      }
      if (file25_Product_No == "PRODUCT_ANY_017")
      {
        file25_Set_No = 2;
      }
      if (file25_Product_No == "PRODUCT_ANY_010")
      {
        file25_Set_No = 2;
        Use_BLB = 1;
      }
      if (file25_Product_No == "PRODUCT_ALL_029")
      {
        file25_Set_No = 2;
      }
      if (file25_Product_No == "PRODUCT_ALL_030")
      {
        file25_Set_No = 2;
      }
      if (file25_Product_No == "PRODUCT_ALL_031")
      {
        file25_Set_No = 3;
      }
      PCR_Remain_PRODUCT_011 = file25_PCR_Remain;
      Trace ("Product = ", file25_Product_No);
      Trace ("Product Name = ", file25_Product_Name);
      Trace ("NC_No = ", file25_NC_No);
      Trace ("WTC_No = ", file25_WTC_No);
      Trace ("SD_No = ", file25_SD_No);
      Trace ("PC_No = ", file25_PC_No);
      Trace ("Set_No = ", file25_Set_No);
      Trace ("PCR_Remain_PRODUCT_011 = ", PCR_Remain_PRODUCT_011);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    if (Sample_Cnt_PRODUCT_012 != 0)
    {
      file27.AddField("Step", file27_Step, hslString, 255);
      file27.AddField("Product_No", file27_Product_No, hslString, 255);
      file27.AddField("Rack", file27_Rack, hslString, 255);
      file27.AddField("Tube", file27_Tube, hslString, 255);
      file27.AddField("Plate", file27_Plate, hslString, 255);
      file27.AddField("Product_Name", file27_Product_Name, hslString, 255);
      file27.AddField("Extraction_Kit", file27_Extraction_Kit, hslInteger);
      file27.AddField("PC_No", file27_PC_No, hslInteger);
      file27.AddField("NC_No", file27_NC_No, hslInteger);
      file27.AddField("SD_No", file27_SD_No, hslInteger);
      file27.AddField("WTC_No", file27_WTC_No, hslInteger);
      file27.AddField("IC_No", file27_IC_No, hslInteger);
      file27.AddField("Remaining_PCR", PCR_Remain_PRODUCT_012_1st_Tube, hslInteger);
      file27.AddField("PCR_Cartridge_Count", file27_PCR_Remain, hslInteger);
      if( 0 == file27.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "Setting$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
      }
      {
        for(loopCounter9 = 0; loopCounter9 < 12;)
        {
          loopCounter9 = loopCounter9 + 1;
          if( 0 == file27.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != file27.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file27.RemoveFields();
      file27_Set_No = 1;
      if (file27_Product_No == "PRODUCT_ANY_001")
      {
        file27_Set_No = 2;
      }
      if (file27_Product_No == "PRODUCT_ANY_006")
      {
        file11_Set_No = 2;
      }
      if (file27_Product_No == "PRODUCT_ANY_017")
      {
        file11_Set_No = 2;
      }
      if (file27_Product_No == "PRODUCT_ANY_010")
      {
        file11_Set_No = 2;
        Use_BLB = 1;
      }
      if (file27_Product_No == "PRODUCT_ALL_029")
      {
        file27_Set_No = 2;
      }
      if (file27_Product_No == "PRODUCT_ALL_030")
      {
        file27_Set_No = 2;
      }
      if (file27_Product_No == "PRODUCT_ALL_031")
      {
        file27_Set_No = 3;
      }
      PCR_Remain_PRODUCT_012 = file27_PCR_Remain;
      Trace ("Product = ", file27_Product_No);
      Trace ("Product Name = ", file27_Product_Name);
      Trace ("NC_No = ", file27_NC_No);
      Trace ("WTC_No = ", file27_WTC_No);
      Trace ("SD_No = ", file27_SD_No);
      Trace ("PC_No = ", file27_PC_No);
      Trace ("Set_No = ", file27_Set_No);
      Trace ("PCR_Remain_PRODUCT_012 = ", PCR_Remain_PRODUCT_012);
      MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    }
    Trace ("STARMag_Remain = ",STARMag_Remain);
    Trace ("Total Sample Qty. = ", Sample_Cnt);
       if (Sample_Cnt_PRODUCT_001 > 0)
       {
         Trace (file2_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_001);
       }
       if (Sample_Cnt_PRODUCT_002 > 0)
       {
         Trace (file7_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_002);
       }
       if (Sample_Cnt_PRODUCT_003 > 0)
       {
         Trace (file9_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_003);
       }
       if (Sample_Cnt_PRODUCT_004 > 0)
       {
         Trace (file11_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_004);
       }
     if (Sample_Cnt_PRODUCT_005 > 0)
       {
         Trace (file13_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_005);
       }
       if (Sample_Cnt_PRODUCT_006 > 0)
       {
         Trace (file15_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_006);
       }
       if (Sample_Cnt_PRODUCT_007 > 0)
       {
         Trace (file17_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_007);
       }
       if (Sample_Cnt_PRODUCT_008 > 0)
       {
         Trace (file19_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_008);
       }
       if (Sample_Cnt_PRODUCT_009 > 0)
       {
         Trace (file21_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_009);
       }
       if (Sample_Cnt_PRODUCT_010 > 0)
       {
         Trace (file23_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_010);
       }
       if (Sample_Cnt_PRODUCT_011 > 0)
       {
         Trace (file25_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_011);
       }
       if (Sample_Cnt_PRODUCT_012 > 0)
       {
         Trace (file27_Product_Name, " Sample Qty. = ", Sample_Cnt_PRODUCT_012);
       }
    MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    Strip_Cnt_PRODUCT_001 = 0;
    Strip_Cnt_PRODUCT_002 = 0;
    Strip_Cnt_PRODUCT_003 = 0;
    Strip_Cnt_PRODUCT_004 = 0;
    Strip_Cnt_PRODUCT_Total = 0;
    Strip_Cnt_PRODUCT_001 = (Sample_Cnt_PRODUCT_001 + file2_PC_No + file2_NC_No + file2_WTC_No + file2_SD_No);
    Strip_Cnt_PRODUCT_002 = (Sample_Cnt_PRODUCT_002 + file7_PC_No + file7_NC_No + file7_WTC_No + file7_SD_No);
    Strip_Cnt_PRODUCT_003 = (Sample_Cnt_PRODUCT_003 + file9_PC_No + file9_NC_No + file9_WTC_No + file9_SD_No);
    Strip_Cnt_PRODUCT_004 = (Sample_Cnt_PRODUCT_004 + file11_PC_No + file11_NC_No + file11_WTC_No + file11_SD_No);
    Strip_Cnt_PRODUCT_001 = Strip_Cnt_PRODUCT_001 / (8 * 1.0);
    Strip_Cnt_PRODUCT_002 = Strip_Cnt_PRODUCT_002 / (8 * 1.0);
    Strip_Cnt_PRODUCT_003 = Strip_Cnt_PRODUCT_003 / (8 * 1.0);
    Strip_Cnt_PRODUCT_004 = Strip_Cnt_PRODUCT_004 / (8 * 1.0);
    Strip_Cnt_PRODUCT_001 = MthCeiling(Strip_Cnt_PRODUCT_001);
    Strip_Cnt_PRODUCT_002 = MthCeiling(Strip_Cnt_PRODUCT_002);
    Strip_Cnt_PRODUCT_003 = MthCeiling(Strip_Cnt_PRODUCT_003);
    Strip_Cnt_PRODUCT_004 = MthCeiling(Strip_Cnt_PRODUCT_004);
    Strip_Cnt_PRODUCT_Total = Strip_Cnt_PRODUCT_001 + Strip_Cnt_PRODUCT_002 + Strip_Cnt_PRODUCT_003 + Strip_Cnt_PRODUCT_004;
    Trace ("Strip_Cnt_PRODUCT_001 = ", Strip_Cnt_PRODUCT_001);
    Trace ("Strip_Cnt_PRODUCT_002 = ", Strip_Cnt_PRODUCT_002);
    Trace ("Strip_Cnt_PRODUCT_003 = ", Strip_Cnt_PRODUCT_003);
    Trace ("Strip_Cnt_PRODUCT_004 = ", Strip_Cnt_PRODUCT_004);
    Trace ("Strip_Cnt_PRODUCT_Total = ", Strip_Cnt_PRODUCT_Total);
    MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    First_Position_PRODUCT_001 = 0;
    First_Position_PRODUCT_002 = 0;
    First_Position_PRODUCT_003 = 0;
    First_Position_PRODUCT_004 = 0;
    First_Position_PRODUCT_001 = 1;
    First_Position_PRODUCT_002 = Strip_Cnt_PRODUCT_001 * 8 + 1;
    First_Position_PRODUCT_003 = (Strip_Cnt_PRODUCT_001 + Strip_Cnt_PRODUCT_002) * 8 + 1;
    First_Position_PRODUCT_004 = (Strip_Cnt_PRODUCT_001 + Strip_Cnt_PRODUCT_002 + Strip_Cnt_PRODUCT_003) * 8 + 1;
    EXTRACTION_STARLET_V6::Set_ChannelPattern(Sample_Cnt, ChPattern_Chk, ChPattern_Remain, file2_Extraction_Kit, file4_Step_Name, ChPattern_Chk4, ChPattern_Remain12, fileB_Thinprep);
    Set_Seq_Extraction();
    if (file2_Step != "STEP_001")
    {
      Set_Seq_PCRsetup();
    }
    file4.AddField("SubMethod", file4_SubMethod, hslString, 255);
    file4.AddField("Step_Name", file4_Step_Name, hslString, 255);
    if( 0 == file4.Open("C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls" + " " + "'Reconstructed Method$'", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls", "HxMetEdCompCmd");
    }
    StepChk_PKBead_Flag = 0;
    StepChk_Bead_Flag = 0;
    StepChk_IC_Flag = 0;
    StepChk_Ctrdg_Flag = 0;
    StepChk_Chk = 0;
    StepChk_WB1_Flag = 0;
    StepChk_WB2_Flag = 0;
    StepChk_Thinprep_AfterSample = 0;
    {
      loopCounter45 = 0;
      while (
         (file4.Eof() == 0)
      )
      {
        loopCounter45 = loopCounter45 + 1;
        if( 0 == file4.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        SubMethod_right = StrRight(file4_SubMethod, 6);
        if (file4_Step_Name == "Wash_Buffer_2_Dispense")
        {
          StepChk_WB2_Flag = 1;
        }
        if (file4_Step_Name == "Wash_Buffer_1_Dispense")
        {
          StepChk_WB1_Flag = 1;
        }
        if (file4_SubMethod != "WasteBuffer")
        {
          if (SubMethod_right == "Buffer")
          {
            StepChk_Ctrdg_Flag = 1;
            StepChk_Chk = 1;
          }
        }
        if (fileB_Thinprep != "true")
        {
          if (file4_SubMethod == "Disp_PKmix")
          {
            StepChk_PKBead_Flag = 1;
            StepChk_Chk = 1;
          }
          if (file4_SubMethod == "Disp_Bead")
          {
            StepChk_PKBead_Flag = StepChk_PKBead_Flag + 1;
            StepChk_Bead_Flag = 1;
            StepChk_Chk = 1;
          }
          if (file4_SubMethod == "Disp_IC")
          {
            StepChk_IC_Flag = 1;
            StepChk_Chk = 1;
          }
        }
      }
    }
    if( 0 != file4.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file4.RemoveFields();
    file4.AddField("Step_Name", file4_Step_Name, hslString, 255);
    file4.AddField("Enable", file4_Enable, hslString, 255);
    file4.AddField("No", file4_No, hslInteger);
    file4.AddField("SubMethod", file4_SubMethod, hslString, 255);
    file4.AddField("Liquid_Class", file4_Liquid_Class, hslString, 255);
    file4.AddField("Liquid_Class_2", file4_Liquid_Class_2, hslString, 255);
    file4.AddField("Liquid_Class_3", file4_Liquid_Class_3, hslString, 255);
    file4.AddField("Volume", file4_Volume, hslFloat);
    file4.AddField("Tip_Sequence", file4_Tip_Sequence, hslInteger);
    file4.AddField("Asp_position", file4_Asp_position, hslInteger);
    file4.AddField("Asp_position_2nd", file4_Asp_position_2nd, hslInteger);
    file4.AddField("Asp_Base1", file4_Asp_Base1, hslInteger);
    file4.AddField("Asp_Base4", file4_Asp_Base4, hslInteger);
    file4.AddField("Asp_Base8", file4_Asp_Base8, hslInteger);
    file4.AddField("Asp_cLLD_On", file4_Asp_cLLD_On, hslInteger);
    file4.AddField("Asp_Submerge_Depth", file4_Asp_Submerge_Depth, hslFloat);
    file4.AddField("Asp_Bottom_Height", file4_Asp_Bottom_Height, hslFloat);
    file4.AddField("Asp_Retract_Distance", file4_Asp_Retract_Distance, hslFloat);
    file4.AddField("Asp_Premix_Vol", file4_Asp_Premix_Vol, hslFloat);
    file4.AddField("Asp_Premix_Cycle", file4_Asp_Premix_Cycle, hslInteger);
    file4.AddField("Asp_Premix_ASD", file4_Asp_Premix_ASD, hslFloat);
    file4.AddField("Asp_ADC_On", file4_Asp_ADC_On, hslInteger);
    file4.AddField("PreAliq_Volume", file4_PreAliq_Volume, hslFloat);
    file4.AddField("PreAliq_Disp_cLLD_On", file4_PreAliq_Disp_cLLD_On, hslFloat);
    file4.AddField("PreAliq_Disp_Submerge_Depth", file4_PreAliq_Disp_Submerge_Depth, hslFloat);
    file4.AddField("PreAliq_Disp_Bottom_Height", file4_PreAliq_Disp_Bottom_Height, hslFloat);
    file4.AddField("PreAliq_Retract_Distance", file4_PreAliq_Retract_Distance, hslFloat);
    file4.AddField("Disp_position", file4_Disp_position, hslInteger);
    file4.AddField("Disp_Base1", file4_Disp_Base1, hslInteger);
    file4.AddField("Disp_Base4", file4_Disp_Base4, hslInteger);
    file4.AddField("Disp_Base8", file4_Disp_Base8, hslInteger);
    file4.AddField("Disp_cLLD_On", file4_Disp_cLLD_On, hslInteger);
    file4.AddField("Disp_Submerge_Depth", file4_Disp_Submerge_Depth, hslFloat);
    file4.AddField("Disp_Bottom_Height", file4_Disp_Bottom_Height, hslFloat);
    file4.AddField("Disp_Retract_Distance", file4_Disp_Retract_Distance, hslFloat);
    file4.AddField("Disp_Postmix_Vol", file4_Disp_Postmix_Vol, hslFloat);
    file4.AddField("Disp_Postmix_Cycle", file4_Disp_Postmix_Cycle, hslInteger);
    file4.AddField("Disp_Postmix_ASD", file4_Disp_Postmix_ASD, hslFloat);
    file4.AddField("Incu_Time", file4_Incu_Time, hslFloat);
    file4.AddField("Incu_Speed", file4_Incu_Speed, hslInteger);
    file4.AddField("Incu_Temp", file4_Incu_Temp, hslFloat);
    file4.AddField("Start_Location", file4_Start_Location, hslInteger);
    file4.AddField("Target_Location", file4_Target_Location, hslInteger);
    file4.AddField("Check_DWP", file4_Check_DWP, hslInteger);
    file4.AddField("Seq_Shaker_0", file4_Seq_Shaker_0, hslInteger);
    file4.AddField("Seq_Shaker_1", file4_Seq_Shaker_1, hslInteger);
    file4.AddField("Seq_Shaker_2", file4_Seq_Shaker_2, hslInteger);
    file4.AddField("Seq_Shaker_1_Bead", file4_Seq_Shaker_1_Bead, hslInteger);
    file4.AddField("Seq_Magnet_0", file4_Seq_Magnet_0, hslInteger);
    file4.AddField("Seq_Magnet_1", file4_Seq_Magnet_1, hslInteger);
    file4.AddField("Seq_Magnet_2", file4_Seq_Magnet_2, hslInteger);
    file4.AddField("Reuse_Tip", file4_Reuse_Tip, hslInteger);
    if( 0 == file4.Open("C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls" + " " + "'Reconstructed Method$'", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls", "HxMetEdCompCmd");
    }
    {
      loopCounter2 = 0;
      while (
         (file4.Eof() == 0)
      )
      {
        loopCounter2 = loopCounter2 + 1;
        if( 0 == file4.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Step_Name = file4_Enable;
        if (loopCounter2 == 1)
        {
          MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++\n+++++++++++++++ Initialize HHSs +++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++"));
          EXTRACTION_STARLET_V6::HHS_Initialize(ML_STAR, file1_SimOn, HHS1);
          MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++\n++++++++++++Check Core-Grippers+++++++++++++\n++++++++++++++++++++++++++++++++++++++++++"));
          if (iSwap == 0)
          {
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          }
          if (STEP <= 3)
          {
            if (STEP != 2)
            {
              if (file2_Extraction_Kit == 2)
              {
                MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++\n+++++++++++++++++ HHS Heater ++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++++++"));
                EXTRACTION_STARLET_V6::Start_Temp_HHS(file1_SimOn, HHS1, 100);
              }
              if (file2_Extraction_Kit == 7)
              {
                MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++\n+++++++++++++++++ HHS Heater ++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++++++"));
                EXTRACTION_STARLET_V6::Start_Temp_HHS(file1_SimOn, HHS1, 100);
              }
            }
          }
          MECC::TraceComment(Translate("******* Tip Counter Dialog and Check *******"));
          Use_All_Tips_Part = 0;
          Use_All_Tips_Full = 0;
          Use_All_Tips_Thinprep = 0;
          Use_300ul_Tips = 0;
          file3.AddField("Tip_Sequence", file3_Tip_Sequence, hslInteger);
          if( 0 == file3.Open("C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls" + " " + "'Reconstructed Method$'", hslRead) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls", "HxMetEdCompCmd");
          }
          if (StepChk_IC_Flag > 0)
          {
            Use_IC1 = 0;
            Use_IC2 = 0;
            Use_IC3 = 0;
            Use_IC4 = 0;
            Use_IC5 = 0;
            Use_IC6 = 0;
            fileD.AddField("IC1", fileD_IC1, hslString, 255);
            fileD.AddField("IC2", fileD_IC2, hslString, 255);
            fileD.AddField("IC3", fileD_IC3, hslString, 255);
            fileD.AddField("IC4", fileD_IC4, hslString, 255);
            fileD.AddField("IC5", fileD_IC5, hslString, 255);
            fileD.AddField("IC6", fileD_IC6, hslString, 255);
            if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList2$", hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
            }
            {
              loopCounter14 = 0;
              while (
                 (fileD.Eof() == 0)
              )
              {
                loopCounter14 = loopCounter14 + 1;
                if( 0 == fileD.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if (fileD_IC1 == "true")
                {
                  Use_IC1 = 1;
                  if( 0 != fileD.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  fileD.RemoveFields();
                  break;
                }
              }
            }
            fileD.AddField("IC1", fileD_IC1, hslString, 255);
            fileD.AddField("IC2", fileD_IC2, hslString, 255);
            fileD.AddField("IC3", fileD_IC3, hslString, 255);
            fileD.AddField("IC4", fileD_IC4, hslString, 255);
            fileD.AddField("IC5", fileD_IC5, hslString, 255);
            fileD.AddField("IC6", fileD_IC6, hslString, 255);
            if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList2$", hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
            }
            {
              loopCounter14 = 0;
              while (
                 (fileD.Eof() == 0)
              )
              {
                loopCounter14 = loopCounter14 + 1;
                if( 0 == fileD.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if (fileD_IC2 == "true")
                {
                  Use_IC2 = 1;
                  if( 0 != fileD.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  fileD.RemoveFields();
                  break;
                }
              }
            }
            fileD.AddField("IC1", fileD_IC1, hslString, 255);
            fileD.AddField("IC2", fileD_IC2, hslString, 255);
            fileD.AddField("IC3", fileD_IC3, hslString, 255);
            fileD.AddField("IC4", fileD_IC4, hslString, 255);
            fileD.AddField("IC5", fileD_IC5, hslString, 255);
            fileD.AddField("IC6", fileD_IC6, hslString, 255);
            if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList2$", hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
            }
            {
              loopCounter14 = 0;
              while (
                 (fileD.Eof() == 0)
              )
              {
                loopCounter14 = loopCounter14 + 1;
                if( 0 == fileD.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if (fileD_IC3 == "true")
                {
                  Use_IC3 = 1;
                  if( 0 != fileD.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  fileD.RemoveFields();
                  break;
                }
              }
            }
            fileD.AddField("IC1", fileD_IC1, hslString, 255);
            fileD.AddField("IC2", fileD_IC2, hslString, 255);
            fileD.AddField("IC3", fileD_IC3, hslString, 255);
            fileD.AddField("IC4", fileD_IC4, hslString, 255);
            fileD.AddField("IC5", fileD_IC5, hslString, 255);
            fileD.AddField("IC6", fileD_IC6, hslString, 255);
            if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList2$", hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
            }
            {
              loopCounter14 = 0;
              while (
                 (fileD.Eof() == 0)
              )
              {
                loopCounter14 = loopCounter14 + 1;
                if( 0 == fileD.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if (fileD_IC4 == "true")
                {
                  Use_IC4 = 1;
                  if( 0 != fileD.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  fileD.RemoveFields();
                  break;
                }
              }
            }
            fileD.AddField("IC1", fileD_IC1, hslString, 255);
            fileD.AddField("IC2", fileD_IC2, hslString, 255);
            fileD.AddField("IC3", fileD_IC3, hslString, 255);
            fileD.AddField("IC4", fileD_IC4, hslString, 255);
            fileD.AddField("IC5", fileD_IC5, hslString, 255);
            fileD.AddField("IC6", fileD_IC6, hslString, 255);
            if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList2$", hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
            }
            {
              loopCounter14 = 0;
              while (
                 (fileD.Eof() == 0)
              )
              {
                loopCounter14 = loopCounter14 + 1;
                if( 0 == fileD.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if (fileD_IC5 == "true")
                {
                  Use_IC5 = 1;
                  if( 0 != fileD.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  fileD.RemoveFields();
                  break;
                }
              }
            }
            fileD.AddField("IC1", fileD_IC1, hslString, 255);
            fileD.AddField("IC2", fileD_IC2, hslString, 255);
            fileD.AddField("IC3", fileD_IC3, hslString, 255);
            fileD.AddField("IC4", fileD_IC4, hslString, 255);
            fileD.AddField("IC5", fileD_IC5, hslString, 255);
            fileD.AddField("IC6", fileD_IC6, hslString, 255);
            if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList2$", hslRead) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
            }
            {
              loopCounter14 = 0;
              while (
                 (fileD.Eof() == 0)
              )
              {
                loopCounter14 = loopCounter14 + 1;
                if( 0 == fileD.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if (fileD_IC6 == "true")
                {
                  Use_IC6 = 1;
                  if( 0 != fileD.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  fileD.RemoveFields();
                  break;
                }
              }
            }
            if( 0 != fileD.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            fileD.RemoveFields();
            ChPattern_Chk_IC = StrConcat8(Use_IC1, Use_IC2, Use_IC3, Use_IC4, Use_IC5, Use_IC6, 0, 0);
            if (Use_IC6 == 1)
            {
              Used_IC_No = 6;
            }
            else
            {
              if (Use_IC5 == 1)
              {
                Used_IC_No = 5;
              }
              else
              {
                if (Use_IC4 == 1)
                {
                  Used_IC_No = 4;
                }
                else
                {
                  if (Use_IC3 == 1)
                  {
                    Used_IC_No = 3;
                  }
                  else
                  {
                    if (Use_IC2 == 1)
                    {
                      Used_IC_No = 2;
                    }
                    else
                    {
                      if (Use_IC1 == 1)
                      {
                        Used_IC_No = 1;
                      }
                      else
                      {
                        Used_IC_No = 0;
                      }
                    }
                  }
                }
              }
            }
          }
          if (fileB_Thinprep == "true")
          {
            if (file4_Step_Name == "PK_Dispense")
            {
              if (file1_SimOn == 0)
              {
                if (STEP < 4)
                {
                  if (STEP != 2)
                  {
                    if (StepChk_Chk != 0)
                    {
                      Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                    }
                  }
                }
                if (STEP == 6)
                {
                  if (StepChk_Chk != 0)
                  {
                    Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                  }
                }
              }
            }
            else
            {
              if (file4_Step_Name == "IC_Dispense_1")
              {
                if (STEP < 4)
                {
                  if (STEP != 2)
                  {
                    if (StepChk_Chk != 0)
                    {
                      Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                    }
                  }
                }
                if (STEP == 6)
                {
                  if (StepChk_Chk != 0)
                  {
                    Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                  }
                }
              }
              else
              {
                if (file4_Step_Name == "Move_DWP_from_StartingPosition_to_Heater")
                {
                  if (STEP < 4)
                  {
                    if (STEP != 2)
                    {
                      if (StepChk_Chk != 0)
                      {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                      }
                    }
                  }
                  if (STEP == 6)
                  {
                    if (StepChk_Chk != 0)
                    {
                      Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                    }
                  }
                }
                else
                {
                  if (file4_Step_Name == "Lysis_Buffer_Dispense")
                  {
                    if (STEP < 4)
                    {
                      if (STEP != 2)
                      {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                      }
                    }
                    if (STEP == 6)
                    {
                      if (StepChk_Chk != 0)
                      {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                      }
                    }
                  }
                  else
                  {
                    if (file4_Step_Name == "Sample_Dispense")
                    {
                      if (STEP < 4)
                      {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                      }
                      if (STEP == 6)
                      {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                      }
                    }
                    else
                    {
                      if (STEP < 4)
                      {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Part = Use_All_Tips_Part + 1;
                        StepChk_Thinprep_AfterSample = 1;
                        }
                        }
                      }
                      if (STEP == 6)
                      {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Part = Use_All_Tips_Part + 1;
                        StepChk_Thinprep_AfterSample = 1;
                        }
                      }
                    }
                  }
                }
              }
            }
            if (file4_Step_Name == "PK_Dispense")
            {
              {
                loopCounter1 = 0;
                while (
                   (file3.Eof() == 0)
                )
                {
                  loopCounter1 = loopCounter1 + 1;
                  if( 0 == file3.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if (file3_Tip_Sequence == 2)
                  {
                    Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                  }
                }
              }
              if( 0 != file3.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              file3.RemoveFields();
              if (Use_All_Tips_Thinprep > 0)
              {
                TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
              }
              EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
            }
            else
            {
              if (file4_Step_Name == "IC_Dispense_1")
              {
                {
                  loopCounter1 = 0;
                  while (
                     (file3.Eof() == 0)
                  )
                  {
                    loopCounter1 = loopCounter1 + 1;
                    if( 0 == file3.ReadRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    if (file3_Tip_Sequence == 2)
                    {
                      Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                    }
                  }
                }
                if( 0 != file3.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                file3.RemoveFields();
                if (Use_All_Tips_Thinprep > 0)
                {
                  TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                  TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                  Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
                }
                EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
              }
              else
              {
                if (file4_Step_Name == "Move_DWP_from_StartingPosition_to_Heater")
                {
                  {
                    loopCounter1 = 0;
                    while (
                       (file3.Eof() == 0)
                    )
                    {
                      loopCounter1 = loopCounter1 + 1;
                      if( 0 == file3.ReadRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      if (file3_Tip_Sequence == 2)
                      {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                      }
                    }
                  }
                  if( 0 != file3.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  file3.RemoveFields();
                  if (Use_All_Tips_Thinprep > 0)
                  {
                    TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                    TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                    Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
                  }
                  EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                }
                else
                {
                  if (file4_Step_Name == "Lysis_Buffer_Dispense")
                  {
                    {
                      loopCounter1 = 0;
                      while (
                         (file3.Eof() == 0)
                      )
                      {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 2)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                      }
                    }
                    if( 0 != file3.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    file3.RemoveFields();
                    if (Use_All_Tips_Thinprep > 0)
                    {
                      TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                      TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                      Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
                    }
                    EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                  }
                  else
                  {
                    if (file4_Step_Name == "Sample_Dispense")
                    {
                      {
                        loopCounter1 = 0;
                        while (
                           (file3.Eof() == 0)
                        )
                        {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 2)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                      }
                      if( 0 != file3.Close() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      file3.RemoveFields();
                      if (Use_All_Tips_Thinprep > 0)
                      {
                        TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                        TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                        Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
                      }
                      EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                    }
                    else
                    {
                      {
                        loopCounter1 = 0;
                        while (
                           (file3.Eof() == 0)
                        )
                        {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 1)
                        {
                        Use_All_Tips_Part = Use_All_Tips_Part + 1;
                        }
                        if (file3_Tip_Sequence == 3)
                        {
                        Use_300ul_Tips = Use_300ul_Tips + 1;
                        }
                        }
                      }
                      if( 0 != file3.Close() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      file3.RemoveFields();
                      if (Use_All_Tips_Part > 0)
                      {
                        TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, Translate("All_Tips_Part_Counter"), ML_STAR, 999);
                        TipsOnDeck_New_Part = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part.GetCount();
                        Trace ("TipsOnDeck_New_Part = ", TipsOnDeck_New_Part);
                      }
                      if (Use_300ul_Tips > 0)
                      {
                        TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("All_300ul_Tips_Counter"), ML_STAR, 999);
                        TipsOnDeck_300 = ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetCount();
                        Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
                      }
                      EXTRACTION_STARLET_V6::Check_Tips_Thinprep(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_All_Tips_Part, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, file1_SimOn, STEP, StepChk_Ctrdg_Flag);
                    }
                  }
                }
              }
            }
          }
          else
          {
            if (file1_SimOn == 0)
            {
              if (STEP < 4)
              {
                if (STEP != 2)
                {
                  if (StepChk_Chk != 0)
                  {
                    Use_All_Tips_Full = Use_All_Tips_Full + 1;
                  }
                }
              }
              if (STEP == 6)
              {
                if (StepChk_Chk != 0)
                {
                  Use_All_Tips_Full = Use_All_Tips_Full + 1;
                }
              }
            }
            {
              loopCounter1 = 0;
              while (
                 (file3.Eof() == 0)
              )
              {
                loopCounter1 = loopCounter1 + 1;
                if( 0 == file3.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if (file3_Tip_Sequence == 1)
                {
                  Use_All_Tips_Full = Use_All_Tips_Full + 1;
                }
                if (file3_Tip_Sequence == 3)
                {
                  Use_300ul_Tips = Use_300ul_Tips + 1;
                }
              }
            }
            if( 0 != file3.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            file3.RemoveFields();
            if (Use_All_Tips_Full > 0)
            {
              TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Translate("All_Tips_Full_Counter"), ML_STAR, 999);
              TipsOnDeck_New_Full = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full.GetCount();
              Trace ("TipsOnDeck_New_Full = ", TipsOnDeck_New_Full);
            }
            if (Use_300ul_Tips > 0)
            {
              TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("All_300ul_Tips_Counter"), ML_STAR, 999);
              TipsOnDeck_300 = ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetCount();
              Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
            }
            EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
          }
          Tip_Carrier_3rd = Translate("");
          if (Use_All_Tips_Part > 0)
          {
            Arr_LabwareID_Tips_Part.SetSize(0);
            SeqGetLabwareIds(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, Arr_LabwareID_Tips_Part);
            size_Tips_part=Arr_LabwareID_Tips_Part.GetSize();
            {
              for(loopCounter_tip_part = 0; loopCounter_tip_part < size_Tips_part;)
              {
                loopCounter_tip_part = loopCounter_tip_part + 1;
                LabwareID_Tips_Part=Arr_LabwareID_Tips_Part.GetAt(loopCounter_tip_part-1);
                LabwareID_Tips_Part = StrRight(LabwareID_Tips_Part, 4);
                if (LabwareID_Tips_Part == "0001")
                {
                  Tip_Carrier_2nd_1 = Translate("1,");
                }
                if (LabwareID_Tips_Part == "0002")
                {
                  Tip_Carrier_1st_1 = Translate("1,");
                }
                if (LabwareID_Tips_Part == "0003")
                {
                  Tip_Carrier_1st_2 = Translate("2,");
                }
                if (LabwareID_Tips_Part == "0004")
                {
                  Tip_Carrier_1st_3 = Translate("3,");
                }
                if (LabwareID_Tips_Part == "0005")
                {
                  Tip_Carrier_1st_4 = Translate("4,");
                }
                if (LabwareID_Tips_Part == "0006")
                {
                  Tip_Carrier_1st_5 = Translate("5,");
                }
              }
            }
          }
          if (Use_All_Tips_Full > 0)
          {
            Arr_LabwareID_Tips_Full.SetSize(0);
            SeqGetLabwareIds(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Arr_LabwareID_Tips_Full);
            size_Tips_Full=Arr_LabwareID_Tips_Full.GetSize();
            {
              for(loopCounter_tip_full = 0; loopCounter_tip_full < size_Tips_Full;)
              {
                loopCounter_tip_full = loopCounter_tip_full + 1;
                LabwareID_Tips_Full=Arr_LabwareID_Tips_Full.GetAt(loopCounter_tip_full-1);
                LabwareID_Tips_Full = StrRight(LabwareID_Tips_Full, 4);
                if (LabwareID_Tips_Full == "0001")
                {
                  Tip_Carrier_2nd_1 = Translate("1,");
                }
                if (LabwareID_Tips_Full == "0002")
                {
                  Tip_Carrier_1st_1 = Translate("1,");
                }
                if (LabwareID_Tips_Full == "0003")
                {
                  Tip_Carrier_1st_2 = Translate("2,");
                }
                if (LabwareID_Tips_Full == "0004")
                {
                  Tip_Carrier_1st_3 = Translate("3,");
                }
                if (LabwareID_Tips_Full == "0005")
                {
                  Tip_Carrier_1st_4 = Translate("4,");
                }
                if (LabwareID_Tips_Full == "0006")
                {
                  Tip_Carrier_1st_5 = Translate("5,");
                }
                if (LabwareID_Tips_Full == "0007")
                {
                  Tip_Carrier_3rd = Translate("2");
                }
              }
            }
          }
          if (Use_All_Tips_Thinprep > 0)
          {
            Arr_LabwareID_Tips_Thinprep.SetSize(0);
            SeqGetLabwareIds(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Arr_LabwareID_Tips_Thinprep);
            size_Tips_thinprep=Arr_LabwareID_Tips_Thinprep.GetSize();
            {
              for(loopCounter_tip_thinprep = 0; loopCounter_tip_thinprep < size_Tips_thinprep;)
              {
                loopCounter_tip_thinprep = loopCounter_tip_thinprep + 1;
                LabwareID_Tips_Thinprep=Arr_LabwareID_Tips_Thinprep.GetAt(loopCounter_tip_thinprep-1);
                LabwareID_Tips_Thinprep = StrRight(LabwareID_Tips_Thinprep, 4);
                if (LabwareID_Tips_Thinprep == "0007")
                {
                  Tip_Carrier_3rd = Translate("2");
                }
              }
            }
          }
          if (Use_300ul_Tips > 0)
          {
            Arr_LabwareID_Tips_300.SetSize(0);
            SeqGetLabwareIds(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Arr_LabwareID_Tips_300);
            size_Tips_300=Arr_LabwareID_Tips_300.GetSize();
            {
              for(loopCounter_tip_300 = 0; loopCounter_tip_300 < size_Tips_300;)
              {
                loopCounter_tip_300 = loopCounter_tip_300 + 1;
                LabwareID_Tips_300=Arr_LabwareID_Tips_300.GetAt(loopCounter_tip_300-1);
                LabwareID_Tips_300 = StrRight(LabwareID_Tips_300, 4);
                if (LabwareID_Tips_300 == "0001")
                {
                  Tip_Carrier_2nd_2 = Translate("2,");
                }
                if (LabwareID_Tips_300 == "0002")
                {
                  Tip_Carrier_2nd_3 = Translate("3,");
                }
                if (LabwareID_Tips_300 == "0003")
                {
                  Tip_Carrier_2nd_4 = Translate("4,");
                }
                if (LabwareID_Tips_300 == "0004")
                {
                  Tip_Carrier_2nd_5 = Translate("5,");
                }
              }
            }
          }
          Tip_Carrier_1st = StrConcat8(Tip_Carrier_1st_1, Tip_Carrier_1st_2, Tip_Carrier_1st_3, Tip_Carrier_1st_4, Tip_Carrier_1st_5, Translate(""), Translate(""), Translate(""));
          StrReplace(Tip_Carrier_1st, Translate("0"), Translate(""));
          Length_Tip_Carrier_1st = StrGetLength(Tip_Carrier_1st);
          if (Length_Tip_Carrier_1st > 1)
          {
            Length_Tip_Carrier_1st = Length_Tip_Carrier_1st - 1;
          }
          Tip_Carrier_1st = StrLeft(Tip_Carrier_1st, Length_Tip_Carrier_1st);
          Tip_Carrier_2nd = StrConcat8(Tip_Carrier_2nd_1, Tip_Carrier_2nd_2, Tip_Carrier_2nd_3, Tip_Carrier_2nd_4, Tip_Carrier_2nd_5, Translate(""), Translate(""), Translate(""));
          StrReplace(Tip_Carrier_2nd, Translate("0"), Translate(""));
          Length_Tip_Carrier_2nd = StrGetLength(Tip_Carrier_2nd);
          if (Length_Tip_Carrier_2nd > 1)
          {
            Length_Tip_Carrier_2nd = Length_Tip_Carrier_2nd - 1;
          }
          Tip_Carrier_2nd = StrLeft(Tip_Carrier_2nd, Length_Tip_Carrier_2nd);
          Tip_Carrier_1st_1 = Translate("0");
          Tip_Carrier_1st_2 = Translate("0");
          Tip_Carrier_1st_3 = Translate("0");
          Tip_Carrier_1st_4 = Translate("0");
          Tip_Carrier_1st_5 = Translate("0");
          Tip_Carrier_2nd_1 = Translate("0");
          Tip_Carrier_2nd_2 = Translate("0");
          Tip_Carrier_2nd_3 = Translate("0");
          Tip_Carrier_2nd_4 = Translate("0");
          Tip_Carrier_2nd_5 = Translate("0");
          MECC::TraceComment(Translate("********************* LOAD CARRIERS *********************"));
          if (fileB_Thinprep == "true")
          {
            if (file4_Step_Name != "PK_Dispense")
            {
              if (file4_Step_Name != "Lysis_Buffer_Dispense")
              {
                if (file4_Step_Name != "Sample_Dispense")
                {
                  if (file2_TipScan == 1)
                  {
                    onerror goto errLabel_128 ;
                    err.Clear();
                    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                    errLabel_128 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      dialogHandle_106.SetOutput(Translate("The position of the installed tips differs from the position you set in the Edit Tip Count."), "\n", Translate("Please check the position of the tips."));
                      if( 0 == dialogHandle_106.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                      {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      dialogHandle_106.ShowOutput(Translate("Tip Install Position Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                      if( 0 == dialogHandle_106.PlaySound("") )
                      {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      file3.AddField("Tip_Sequence", file3_Tip_Sequence, hslInteger);
                      if( 0 == file3.Open("C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls" + " " + "'Reconstructed Method$'", hslRead) )
                      {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls", "HxMetEdCompCmd");
                      }
                      if (fileB_Thinprep == "true")
                      {
                        if (file4_Step_Name == "PK_Dispense")
                        {
                        if (file1_SimOn == 0)
                        {
                        if (STEP < 4)
                        {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if (STEP == 6)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        }
                        else
                        {
                        if (file4_Step_Name == "IC_Dispense_1")
                        {
                        if (STEP < 4)
                        {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if (STEP == 6)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        else
                        {
                        if (file4_Step_Name == "Move_DWP_from_StartingPosition_to_Heater")
                        {
                        if (STEP < 4)
                        {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if (STEP == 6)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        else
                        {
                        if (file4_Step_Name == "Lysis_Buffer_Dispense")
                        {
                        if (STEP < 4)
                        {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if (STEP == 6)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        else
                        {
                        if (file4_Step_Name == "Sample_Dispense")
                        {
                        if (STEP < 4)
                        {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if (STEP == 6)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        else
                        {
                        if (STEP < 4)
                        {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Part = Use_All_Tips_Part + 1;
                        StepChk_Thinprep_AfterSample = 1;
                        }
                        }
                        }
                        if (STEP == 6)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Part = Use_All_Tips_Part + 1;
                        StepChk_Thinprep_AfterSample = 1;
                        }
                        }
                        }
                        }
                        }
                        }
                        }
                        if (file4_Step_Name == "PK_Dispense")
                        {
                        {
                        loopCounter1 = 0;
                        while (
                           (file3.Eof() == 0)
                        )
                        {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 2)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if( 0 != file3.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file3.RemoveFields();
                        if (Use_All_Tips_Thinprep > 0)
                        {
                        TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                        TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                        Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
                        }
                        EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                        }
                        else
                        {
                        if (file4_Step_Name == "IC_Dispense_1")
                        {
                        {
                        loopCounter1 = 0;
                        while (
                           (file3.Eof() == 0)
                        )
                        {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 2)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if( 0 != file3.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file3.RemoveFields();
                        if (Use_All_Tips_Thinprep > 0)
                        {
                        TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                        TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                        Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
                        }
                        EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                        }
                        else
                        {
                        if (file4_Step_Name == "Move_DWP_from_StartingPosition_to_Heater")
                        {
                        {
                        loopCounter1 = 0;
                        while (
                           (file3.Eof() == 0)
                        )
                        {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 2)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if( 0 != file3.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file3.RemoveFields();
                        if (Use_All_Tips_Thinprep > 0)
                        {
                        TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                        TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                        Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
                        }
                        EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                        }
                        else
                        {
                        if (file4_Step_Name == "Lysis_Buffer_Dispense")
                        {
                        {
                        loopCounter1 = 0;
                        while (
                           (file3.Eof() == 0)
                        )
                        {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 2)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if( 0 != file3.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file3.RemoveFields();
                        if (Use_All_Tips_Thinprep > 0)
                        {
                        TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                        TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                        Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
                        }
                        EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                        }
                        else
                        {
                        if (file4_Step_Name == "Sample_Dispense")
                        {
                        {
                        loopCounter1 = 0;
                        while (
                           (file3.Eof() == 0)
                        )
                        {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 2)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if( 0 != file3.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file3.RemoveFields();
                        if (Use_All_Tips_Thinprep > 0)
                        {
                        TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                        TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                        Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
                        }
                        EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                        }
                        else
                        {
                        {
                        loopCounter1 = 0;
                        while (
                           (file3.Eof() == 0)
                        )
                        {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 1)
                        {
                        Use_All_Tips_Part = Use_All_Tips_Part + 1;
                        }
                        if (file3_Tip_Sequence == 3)
                        {
                        Use_300ul_Tips = Use_300ul_Tips + 1;
                        }
                        }
                        }
                        if( 0 != file3.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file3.RemoveFields();
                        if (Use_All_Tips_Part > 0)
                        {
                        TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, Translate("All_Tips_Part_Counter"), ML_STAR, 999);
                        TipsOnDeck_New_Part = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part.GetCount();
                        Trace ("TipsOnDeck_New_Part = ", TipsOnDeck_New_Part);
                        }
                        if (Use_300ul_Tips > 0)
                        {
                        TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("All_300ul_Tips_Counter"), ML_STAR, 999);
                        TipsOnDeck_300 = ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetCount();
                        Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
                        }
                        EXTRACTION_STARLET_V6::Check_Tips_Thinprep(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_All_Tips_Part, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, file1_SimOn, STEP, StepChk_Ctrdg_Flag);
                        }
                        }
                        }
                        }
                        }
                      }
                      else
                      {
                        if (file1_SimOn == 0)
                        {
                        if (STEP < 4)
                        {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Full = Use_All_Tips_Full + 1;
                        }
                        }
                        }
                        if (STEP == 6)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Full = Use_All_Tips_Full + 1;
                        }
                        }
                        }
                        {
                        loopCounter1 = 0;
                        while (
                           (file3.Eof() == 0)
                        )
                        {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 1)
                        {
                        Use_All_Tips_Full = Use_All_Tips_Full + 1;
                        }
                        if (file3_Tip_Sequence == 3)
                        {
                        Use_300ul_Tips = Use_300ul_Tips + 1;
                        }
                        }
                        }
                        if( 0 != file3.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file3.RemoveFields();
                        if (Use_All_Tips_Full > 0)
                        {
                        TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Translate("All_Tips_Full_Counter"), ML_STAR, 999);
                        TipsOnDeck_New_Full = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full.GetCount();
                        Trace ("TipsOnDeck_New_Full = ", TipsOnDeck_New_Full);
                        }
                        if (Use_300ul_Tips > 0)
                        {
                        TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("All_300ul_Tips_Counter"), ML_STAR, 999);
                        TipsOnDeck_300 = ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetCount();
                        Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
                        }
                        EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                      }
                      Tip_Carrier_3rd = Translate("");
                      if (Use_All_Tips_Part > 0)
                      {
                        Arr_LabwareID_Tips_Part.SetSize(0);
                        SeqGetLabwareIds(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, Arr_LabwareID_Tips_Part);
                        size_Tips_part=Arr_LabwareID_Tips_Part.GetSize();
                        {
                        for(loopCounter_tip_part = 0; loopCounter_tip_part < size_Tips_part;)
                        {
                        loopCounter_tip_part = loopCounter_tip_part + 1;
                        LabwareID_Tips_Part=Arr_LabwareID_Tips_Part.GetAt(loopCounter_tip_part-1);
                        LabwareID_Tips_Part = StrRight(LabwareID_Tips_Part, 4);
                        if (LabwareID_Tips_Part == "0001")
                        {
                        Tip_Carrier_2nd_1 = Translate("1,");
                        }
                        if (LabwareID_Tips_Part == "0002")
                        {
                        Tip_Carrier_1st_1 = Translate("1,");
                        }
                        if (LabwareID_Tips_Part == "0003")
                        {
                        Tip_Carrier_1st_2 = Translate("2,");
                        }
                        if (LabwareID_Tips_Part == "0004")
                        {
                        Tip_Carrier_1st_3 = Translate("3,");
                        }
                        if (LabwareID_Tips_Part == "0005")
                        {
                        Tip_Carrier_1st_4 = Translate("4,");
                        }
                        if (LabwareID_Tips_Part == "0006")
                        {
                        Tip_Carrier_1st_5 = Translate("5,");
                        }
                        }
                        }
                      }
                      if (Use_All_Tips_Full > 0)
                      {
                        Arr_LabwareID_Tips_Full.SetSize(0);
                        SeqGetLabwareIds(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Arr_LabwareID_Tips_Full);
                        size_Tips_Full=Arr_LabwareID_Tips_Full.GetSize();
                        {
                        for(loopCounter_tip_full = 0; loopCounter_tip_full < size_Tips_Full;)
                        {
                        loopCounter_tip_full = loopCounter_tip_full + 1;
                        LabwareID_Tips_Full=Arr_LabwareID_Tips_Full.GetAt(loopCounter_tip_full-1);
                        LabwareID_Tips_Full = StrRight(LabwareID_Tips_Full, 4);
                        if (LabwareID_Tips_Full == "0001")
                        {
                        Tip_Carrier_2nd_1 = Translate("1,");
                        }
                        if (LabwareID_Tips_Full == "0002")
                        {
                        Tip_Carrier_1st_1 = Translate("1,");
                        }
                        if (LabwareID_Tips_Full == "0003")
                        {
                        Tip_Carrier_1st_2 = Translate("2,");
                        }
                        if (LabwareID_Tips_Full == "0004")
                        {
                        Tip_Carrier_1st_3 = Translate("3,");
                        }
                        if (LabwareID_Tips_Full == "0005")
                        {
                        Tip_Carrier_1st_4 = Translate("4,");
                        }
                        if (LabwareID_Tips_Full == "0006")
                        {
                        Tip_Carrier_1st_5 = Translate("5,");
                        }
                        if (LabwareID_Tips_Full == "0007")
                        {
                        Tip_Carrier_3rd = Translate("2");
                        }
                        }
                        }
                      }
                      if (Use_All_Tips_Thinprep > 0)
                      {
                        Arr_LabwareID_Tips_Thinprep.SetSize(0);
                        SeqGetLabwareIds(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Arr_LabwareID_Tips_Thinprep);
                        size_Tips_thinprep=Arr_LabwareID_Tips_Thinprep.GetSize();
                        {
                        for(loopCounter_tip_thinprep = 0; loopCounter_tip_thinprep < size_Tips_thinprep;)
                        {
                        loopCounter_tip_thinprep = loopCounter_tip_thinprep + 1;
                        LabwareID_Tips_Thinprep=Arr_LabwareID_Tips_Thinprep.GetAt(loopCounter_tip_thinprep-1);
                        LabwareID_Tips_Thinprep = StrRight(LabwareID_Tips_Thinprep, 4);
                        if (LabwareID_Tips_Thinprep == "0007")
                        {
                        Tip_Carrier_3rd = Translate("2");
                        }
                        }
                        }
                      }
                      if (Use_300ul_Tips > 0)
                      {
                        Arr_LabwareID_Tips_300.SetSize(0);
                        SeqGetLabwareIds(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Arr_LabwareID_Tips_300);
                        size_Tips_300=Arr_LabwareID_Tips_300.GetSize();
                        {
                        for(loopCounter_tip_300 = 0; loopCounter_tip_300 < size_Tips_300;)
                        {
                        loopCounter_tip_300 = loopCounter_tip_300 + 1;
                        LabwareID_Tips_300=Arr_LabwareID_Tips_300.GetAt(loopCounter_tip_300-1);
                        LabwareID_Tips_300 = StrRight(LabwareID_Tips_300, 4);
                        if (LabwareID_Tips_300 == "0001")
                        {
                        Tip_Carrier_2nd_2 = Translate("2,");
                        }
                        if (LabwareID_Tips_300 == "0002")
                        {
                        Tip_Carrier_2nd_3 = Translate("3,");
                        }
                        if (LabwareID_Tips_300 == "0003")
                        {
                        Tip_Carrier_2nd_4 = Translate("4,");
                        }
                        if (LabwareID_Tips_300 == "0004")
                        {
                        Tip_Carrier_2nd_5 = Translate("5,");
                        }
                        }
                        }
                      }
                      Tip_Carrier_1st = StrConcat8(Tip_Carrier_1st_1, Tip_Carrier_1st_2, Tip_Carrier_1st_3, Tip_Carrier_1st_4, Tip_Carrier_1st_5, Translate(""), Translate(""), Translate(""));
                      StrReplace(Tip_Carrier_1st, Translate("0"), Translate(""));
                      Length_Tip_Carrier_1st = StrGetLength(Tip_Carrier_1st);
                      if (Length_Tip_Carrier_1st > 1)
                      {
                        Length_Tip_Carrier_1st = Length_Tip_Carrier_1st - 1;
                      }
                      Tip_Carrier_1st = StrLeft(Tip_Carrier_1st, Length_Tip_Carrier_1st);
                      Tip_Carrier_2nd = StrConcat8(Tip_Carrier_2nd_1, Tip_Carrier_2nd_2, Tip_Carrier_2nd_3, Tip_Carrier_2nd_4, Tip_Carrier_2nd_5, Translate(""), Translate(""), Translate(""));
                      StrReplace(Tip_Carrier_2nd, Translate("0"), Translate(""));
                      Length_Tip_Carrier_2nd = StrGetLength(Tip_Carrier_2nd);
                      if (Length_Tip_Carrier_2nd > 1)
                      {
                        Length_Tip_Carrier_2nd = Length_Tip_Carrier_2nd - 1;
                      }
                      Tip_Carrier_2nd = StrLeft(Tip_Carrier_2nd, Length_Tip_Carrier_2nd);
                      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                    }   /* end if from skip handler if no error */
                  }
                  else
                  {
                    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  }
                }
              }
            }
            if (file1_SimOn == 0)
            {
              Plate_Quantity_Flag = 0;
              if (Plate_Quantity == 5)
              {
                Plate_Quantity = 1;
                Plate_Quantity_Flag = 1;
              }
              if (file2_Set_No == 2)
              {
                if (Separate_No > 48)
                {
                  Plate_Quantity = 2;
                }
                else
                {
                  Plate_Quantity = 1;
                }
              }
              if (file2_Set_No == 3)
              {
                if (Separate_No > 32)
                {
                  Plate_Quantity = 2;
                }
                else
                {
                  Plate_Quantity = 1;
                }
              }
              if (file2_PlateOrder == 1)
              {
                if (file2_BarcodeDWP == 0)
                {
                  if (file2_BarcodePlate == 0)
                  {
                    Position_Barcode_Plate = Translate("");
                  }
                  else
                  {
                    if (Plate_Quantity >= 2)
                    {
                      Position_Barcode_Plate = Translate("2,3");
                    }
                    else
                    {
                      Position_Barcode_Plate = Translate("2");
                    }
                  }
                }
                else
                {
                  if (file2_BarcodePlate == 0)
                  {
                    Position_Barcode_Plate = Translate("1");
                  }
                  else
                  {
                    if (Plate_Quantity >= 2)
                    {
                      Position_Barcode_Plate = Translate("1,2,3");
                    }
                    else
                    {
                      Position_Barcode_Plate = Translate("1,2");
                    }
                  }
                }
              }
              else
              {
                if (file2_BarcodeDWP == 0)
                {
                  if (file2_BarcodePlate == 0)
                  {
                    Position_Barcode_Plate = Translate("");
                  }
                  else
                  {
                    if (Plate_Quantity == 4)
                    {
                      Position_Barcode_Plate = Translate("2,3");
                    }
                    else
                    {
                      Position_Barcode_Plate = Translate("2");
                    }
                  }
                }
                else
                {
                  if (file2_BarcodePlate == 0)
                  {
                    Position_Barcode_Plate = Translate("1");
                  }
                  else
                  {
                    if (Plate_Quantity == 4)
                    {
                      Position_Barcode_Plate = Translate("1,2,3");
                    }
                    else
                    {
                      Position_Barcode_Plate = Translate("1,2");
                    }
                  }
                }
              }
              Barcode_Error_Flag = 1;
              {
                while (Barcode_Error_Flag == 1)
                {
                  onerror goto errLabel_129 ;
                  err.Clear();
                  file5.AddField("Renewal_Flag", Renewal_Flag, hslInteger);
                  file5.AddField("Dupli_Flag", Dupli_Flag, hslInteger);
                  file5.SetDelimiter(",");
                  if( 0 == file5.Open("C:\\Seegene_Method_Setting\\Duplibarcode.csv", hslAppend) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\Duplibarcode.csv", "HxMetEdCompCmd");
                  }
                  Renewal_Flag = 0;
                  Dupli_Flag = 0;
                  if( 0 == file5.WriteRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if( 0 != file5.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  file5.RemoveFields();
                  {
                    	variable arrRetValues[];
                    	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                    	Return_Barcode = arrRetValues[3];
                  }
                  if (Position_Barcode_Plate != "")
                  {
                    MECC::TraceComment(Translate("\"barcodeplate.txt\" file has been created."));
                  }
                  else
                  {
                    Barcode_Error_Flag = 0;
                  }
                  Chk_BarcodePos1 = StrFind(Position_Barcode_Plate, Translate("1"));
                  Chk_BarcodePos2 = StrFind(Position_Barcode_Plate, Translate("2"));
                  Chk_BarcodePos3 = StrFind(Position_Barcode_Plate, Translate("3"));
                  if (Chk_BarcodePos1 != -1)
                  {
                    Return_BarcodePos1 = StepReturn::GetBarcode(1, Return_Barcode);
                    DWP_Barcodemask = StrLeft(Return_BarcodePos1, 8);
                    if (DWP_Barcodemask != "SDP0096B")
                    {
                      ErrRaise(109, Translate("DWP barcode mask error"));
                    }
                    else
                    {
                      DWP_BarcodeCnt = StrGetLength(Return_BarcodePos1);
                      if (DWP_BarcodeCnt != 19)
                      {
                        ErrRaise(109, Translate("DWP barcode mask error"));
                      }
                    }
                  }
                  if (Chk_BarcodePos2 != -1)
                  {
                    Return_BarcodePos2 = StepReturn::GetBarcode(2, Return_Barcode);
                    Plate1_BarcodeCnt = StrGetLength(Return_BarcodePos2);
                    if (Plate1_BarcodeCnt != 7)
                    {
                      ErrRaise(109, Translate("DWP barcode mask error"));
                    }
                  }
                  if (Chk_BarcodePos3 != -1)
                  {
                    Return_BarcodePos3 = StepReturn::GetBarcode(3, Return_Barcode);
                    Plate2_BarcodeCnt = StrGetLength(Return_BarcodePos3);
                    if (Plate2_BarcodeCnt != 7)
                    {
                      ErrRaise(109, Translate("DWP barcode mask error"));
                    }
                  }
                  if (Position_Barcode_Plate != "")
                  {
                    Renewal_Flag = 0;
                    {
                      while (Renewal_Flag == 0)
                      {
                        file5.AddField("Renewal_Flag", Renewal_Flag, hslInteger);
                        file5.AddField("Dupli_Flag", Dupli_Flag, hslInteger);
                        file5.SetDelimiter(",");
                        if( 0 == file5.Open("C:\\Seegene_Method_Setting\\Duplibarcode.csv", hslAppend) )
                        {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\Duplibarcode.csv", "HxMetEdCompCmd");
                        }
                        file5.Seek(1, hslLast);
                        if( 0 == file5.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if( 0 != file5.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file5.RemoveFields();
                        if (Renewal_Flag == 1)
                        {
                        if (Dupli_Flag >= 1)
                        {
                        if (Dupli_Flag == 1)
                        {
                        dialogHandle_14.SetOutput(Translate("DWP barcode information already used."), "\n", Translate("Do you want to continue?"));
                        if( 0 == dialogHandle_14.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        Return_ChkBarcode = dialogHandle_14.ShowOutput(Translate("Invalid Barcode Information"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_14.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (Return_ChkBarcode == 7)
                        {
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_15.SetOutput(Translate("Please put the plate in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_15.ShowOutput(Translate("Invalid Barcode Information"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        }
                        else
                        {
                        Barcode_Error_Flag = 0;
                        }
                        }
                        if (Dupli_Flag == 2)
                        {
                        dialogHandle_16.SetOutput(Translate("PCR plate barcode information already used."), "\n", Translate("Do you want to continue?"));
                        if( 0 == dialogHandle_16.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        Return_ChkBarcode = dialogHandle_16.ShowOutput(Translate("Invalid Barcode Information"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_16.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (Return_ChkBarcode == 7)
                        {
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_11.SetOutput(Translate("Please put the plate in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_11.ShowOutput(Translate("Invalid Barcode Information"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        }
                        else
                        {
                        Barcode_Error_Flag = 0;
                        }
                        }
                        if (Dupli_Flag == 3)
                        {
                        dialogHandle_12.SetOutput(Translate("DWP and PCR plate barcode information already used."), "\n", Translate("Do you want to continue?"));
                        if( 0 == dialogHandle_12.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        Return_ChkBarcode = dialogHandle_12.ShowOutput(Translate("Invalid Barcode Information"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_12.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (Return_ChkBarcode == 7)
                        {
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_13.SetOutput(Translate("Please put the plate in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_13.ShowOutput(Translate("Invalid Barcode Information"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        }
                        else
                        {
                        Barcode_Error_Flag = 0;
                        }
                        }
                        }
                        else
                        {
                        Barcode_Error_Flag = 0;
                        }
                        Renewal_Flag = 0;
                        Dupli_Flag = 0;
                        file5.AddField("Renewal_Flag", Renewal_Flag, hslInteger);
                        file5.AddField("Dupli_Flag", Dupli_Flag, hslInteger);
                        file5.SetDelimiter(",");
                        if( 0 == file5.Open("C:\\Seegene_Method_Setting\\Duplibarcode.csv", hslAppend) )
                        {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\Duplibarcode.csv", "HxMetEdCompCmd");
                        }
                        if( 0 == file5.WriteRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if( 0 != file5.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file5.RemoveFields();
                        break;
                        }
                      }
                    }
                  }
                  errLabel_129 : {}
                  onerror goto 0;
                  if (err.GetId() != 0)   /* skip handler if no error */
                  {
                    Barcode_Error_Flag = 1;
                    dialogHandle_10.SetOutput(Translate("The DWP or PCR plate with proper barcode is not installed."), "\n", Translate("Click OK to unload the carrier and to place the plate in the correct position."));
                    if( 0 == dialogHandle_10.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_10.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_10.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                    dialogHandle_9.SetOutput(Translate("Please put the plate in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                    dialogHandle_9.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  }   /* end if from skip handler if no error */
                }
              }
              if (Plate_Quantity_Flag == 1)
              {
                Plate_Quantity = 5;
              }
            }
            else
            {
              ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            }
            if (file2_TipScan == 1)
            {
              onerror goto errLabel_130 ;
              err.Clear();
              ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              errLabel_130 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                dialogHandle_123.SetOutput(Translate("The position of the installed tips differs from the position you set in the Edit Tip Count."), "\n", Translate("Please check the position of the tips."));
                if( 0 == dialogHandle_123.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_123.ShowOutput(Translate("Tip Install Position Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_123.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                file3.AddField("Tip_Sequence", file3_Tip_Sequence, hslInteger);
                if( 0 == file3.Open("C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls" + " " + "'Reconstructed Method$'", hslRead) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls", "HxMetEdCompCmd");
                }
                if (fileB_Thinprep == "true")
                {
                  if (file4_Step_Name == "PK_Dispense")
                  {
                    if (file1_SimOn == 0)
                    {
                      if (STEP < 4)
                      {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                      }
                      if (STEP == 6)
                      {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                      }
                    }
                  }
                  else
                  {
                    if (file4_Step_Name == "IC_Dispense_1")
                    {
                      if (STEP < 4)
                      {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                      }
                      if (STEP == 6)
                      {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                      }
                    }
                    else
                    {
                      if (file4_Step_Name == "Move_DWP_from_StartingPosition_to_Heater")
                      {
                        if (STEP < 4)
                        {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if (STEP == 6)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                      }
                      else
                      {
                        if (file4_Step_Name == "Lysis_Buffer_Dispense")
                        {
                        if (STEP < 4)
                        {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if (STEP == 6)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        else
                        {
                        if (file4_Step_Name == "Sample_Dispense")
                        {
                        if (STEP < 4)
                        {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if (STEP == 6)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        else
                        {
                        if (STEP < 4)
                        {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Part = Use_All_Tips_Part + 1;
                        StepChk_Thinprep_AfterSample = 1;
                        }
                        }
                        }
                        if (STEP == 6)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Part = Use_All_Tips_Part + 1;
                        StepChk_Thinprep_AfterSample = 1;
                        }
                        }
                        }
                        }
                      }
                    }
                  }
                  if (file4_Step_Name == "PK_Dispense")
                  {
                    {
                      loopCounter1 = 0;
                      while (
                         (file3.Eof() == 0)
                      )
                      {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 2)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                      }
                    }
                    if( 0 != file3.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    file3.RemoveFields();
                    if (Use_All_Tips_Thinprep > 0)
                    {
                      TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                      TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                      Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
                    }
                    EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                  }
                  else
                  {
                    if (file4_Step_Name == "IC_Dispense_1")
                    {
                      {
                        loopCounter1 = 0;
                        while (
                           (file3.Eof() == 0)
                        )
                        {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 2)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                      }
                      if( 0 != file3.Close() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      file3.RemoveFields();
                      if (Use_All_Tips_Thinprep > 0)
                      {
                        TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                        TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                        Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
                      }
                      EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                    }
                    else
                    {
                      if (file4_Step_Name == "Move_DWP_from_StartingPosition_to_Heater")
                      {
                        {
                        loopCounter1 = 0;
                        while (
                           (file3.Eof() == 0)
                        )
                        {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 2)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if( 0 != file3.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file3.RemoveFields();
                        if (Use_All_Tips_Thinprep > 0)
                        {
                        TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                        TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                        Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
                        }
                        EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                      }
                      else
                      {
                        if (file4_Step_Name == "Lysis_Buffer_Dispense")
                        {
                        {
                        loopCounter1 = 0;
                        while (
                           (file3.Eof() == 0)
                        )
                        {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 2)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if( 0 != file3.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file3.RemoveFields();
                        if (Use_All_Tips_Thinprep > 0)
                        {
                        TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                        TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                        Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
                        }
                        EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                        }
                        else
                        {
                        if (file4_Step_Name == "Sample_Dispense")
                        {
                        {
                        loopCounter1 = 0;
                        while (
                           (file3.Eof() == 0)
                        )
                        {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 2)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if( 0 != file3.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file3.RemoveFields();
                        if (Use_All_Tips_Thinprep > 0)
                        {
                        TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                        TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                        Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
                        }
                        EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                        }
                        else
                        {
                        {
                        loopCounter1 = 0;
                        while (
                           (file3.Eof() == 0)
                        )
                        {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 1)
                        {
                        Use_All_Tips_Part = Use_All_Tips_Part + 1;
                        }
                        if (file3_Tip_Sequence == 3)
                        {
                        Use_300ul_Tips = Use_300ul_Tips + 1;
                        }
                        }
                        }
                        if( 0 != file3.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file3.RemoveFields();
                        if (Use_All_Tips_Part > 0)
                        {
                        TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, Translate("All_Tips_Part_Counter"), ML_STAR, 999);
                        TipsOnDeck_New_Part = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part.GetCount();
                        Trace ("TipsOnDeck_New_Part = ", TipsOnDeck_New_Part);
                        }
                        if (Use_300ul_Tips > 0)
                        {
                        TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("All_300ul_Tips_Counter"), ML_STAR, 999);
                        TipsOnDeck_300 = ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetCount();
                        Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
                        }
                        EXTRACTION_STARLET_V6::Check_Tips_Thinprep(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_All_Tips_Part, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, file1_SimOn, STEP, StepChk_Ctrdg_Flag);
                        }
                        }
                      }
                    }
                  }
                }
                else
                {
                  if (file1_SimOn == 0)
                  {
                    if (STEP < 4)
                    {
                      if (STEP != 2)
                      {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Full = Use_All_Tips_Full + 1;
                        }
                      }
                    }
                    if (STEP == 6)
                    {
                      if (StepChk_Chk != 0)
                      {
                        Use_All_Tips_Full = Use_All_Tips_Full + 1;
                      }
                    }
                  }
                  {
                    loopCounter1 = 0;
                    while (
                       (file3.Eof() == 0)
                    )
                    {
                      loopCounter1 = loopCounter1 + 1;
                      if( 0 == file3.ReadRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      if (file3_Tip_Sequence == 1)
                      {
                        Use_All_Tips_Full = Use_All_Tips_Full + 1;
                      }
                      if (file3_Tip_Sequence == 3)
                      {
                        Use_300ul_Tips = Use_300ul_Tips + 1;
                      }
                    }
                  }
                  if( 0 != file3.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  file3.RemoveFields();
                  if (Use_All_Tips_Full > 0)
                  {
                    TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Translate("All_Tips_Full_Counter"), ML_STAR, 999);
                    TipsOnDeck_New_Full = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full.GetCount();
                    Trace ("TipsOnDeck_New_Full = ", TipsOnDeck_New_Full);
                  }
                  if (Use_300ul_Tips > 0)
                  {
                    TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("All_300ul_Tips_Counter"), ML_STAR, 999);
                    TipsOnDeck_300 = ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetCount();
                    Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
                  }
                  EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                }
                Tip_Carrier_3rd = Translate("");
                if (Use_All_Tips_Part > 0)
                {
                  Arr_LabwareID_Tips_Part.SetSize(0);
                  SeqGetLabwareIds(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, Arr_LabwareID_Tips_Part);
                  size_Tips_part=Arr_LabwareID_Tips_Part.GetSize();
                  {
                    for(loopCounter_tip_part = 0; loopCounter_tip_part < size_Tips_part;)
                    {
                      loopCounter_tip_part = loopCounter_tip_part + 1;
                      LabwareID_Tips_Part=Arr_LabwareID_Tips_Part.GetAt(loopCounter_tip_part-1);
                      LabwareID_Tips_Part = StrRight(LabwareID_Tips_Part, 4);
                      if (LabwareID_Tips_Part == "0001")
                      {
                        Tip_Carrier_2nd_1 = Translate("1,");
                      }
                      if (LabwareID_Tips_Part == "0002")
                      {
                        Tip_Carrier_1st_1 = Translate("1,");
                      }
                      if (LabwareID_Tips_Part == "0003")
                      {
                        Tip_Carrier_1st_2 = Translate("2,");
                      }
                      if (LabwareID_Tips_Part == "0004")
                      {
                        Tip_Carrier_1st_3 = Translate("3,");
                      }
                      if (LabwareID_Tips_Part == "0005")
                      {
                        Tip_Carrier_1st_4 = Translate("4,");
                      }
                      if (LabwareID_Tips_Part == "0006")
                      {
                        Tip_Carrier_1st_5 = Translate("5,");
                      }
                    }
                  }
                }
                if (Use_All_Tips_Full > 0)
                {
                  Arr_LabwareID_Tips_Full.SetSize(0);
                  SeqGetLabwareIds(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Arr_LabwareID_Tips_Full);
                  size_Tips_Full=Arr_LabwareID_Tips_Full.GetSize();
                  {
                    for(loopCounter_tip_full = 0; loopCounter_tip_full < size_Tips_Full;)
                    {
                      loopCounter_tip_full = loopCounter_tip_full + 1;
                      LabwareID_Tips_Full=Arr_LabwareID_Tips_Full.GetAt(loopCounter_tip_full-1);
                      LabwareID_Tips_Full = StrRight(LabwareID_Tips_Full, 4);
                      if (LabwareID_Tips_Full == "0001")
                      {
                        Tip_Carrier_2nd_1 = Translate("1,");
                      }
                      if (LabwareID_Tips_Full == "0002")
                      {
                        Tip_Carrier_1st_1 = Translate("1,");
                      }
                      if (LabwareID_Tips_Full == "0003")
                      {
                        Tip_Carrier_1st_2 = Translate("2,");
                      }
                      if (LabwareID_Tips_Full == "0004")
                      {
                        Tip_Carrier_1st_3 = Translate("3,");
                      }
                      if (LabwareID_Tips_Full == "0005")
                      {
                        Tip_Carrier_1st_4 = Translate("4,");
                      }
                      if (LabwareID_Tips_Full == "0006")
                      {
                        Tip_Carrier_1st_5 = Translate("5,");
                      }
                      if (LabwareID_Tips_Full == "0007")
                      {
                        Tip_Carrier_3rd = Translate("2");
                      }
                    }
                  }
                }
                if (Use_All_Tips_Thinprep > 0)
                {
                  Arr_LabwareID_Tips_Thinprep.SetSize(0);
                  SeqGetLabwareIds(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Arr_LabwareID_Tips_Thinprep);
                  size_Tips_thinprep=Arr_LabwareID_Tips_Thinprep.GetSize();
                  {
                    for(loopCounter_tip_thinprep = 0; loopCounter_tip_thinprep < size_Tips_thinprep;)
                    {
                      loopCounter_tip_thinprep = loopCounter_tip_thinprep + 1;
                      LabwareID_Tips_Thinprep=Arr_LabwareID_Tips_Thinprep.GetAt(loopCounter_tip_thinprep-1);
                      LabwareID_Tips_Thinprep = StrRight(LabwareID_Tips_Thinprep, 4);
                      if (LabwareID_Tips_Thinprep == "0007")
                      {
                        Tip_Carrier_3rd = Translate("2");
                      }
                    }
                  }
                }
                if (Use_300ul_Tips > 0)
                {
                  Arr_LabwareID_Tips_300.SetSize(0);
                  SeqGetLabwareIds(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Arr_LabwareID_Tips_300);
                  size_Tips_300=Arr_LabwareID_Tips_300.GetSize();
                  {
                    for(loopCounter_tip_300 = 0; loopCounter_tip_300 < size_Tips_300;)
                    {
                      loopCounter_tip_300 = loopCounter_tip_300 + 1;
                      LabwareID_Tips_300=Arr_LabwareID_Tips_300.GetAt(loopCounter_tip_300-1);
                      LabwareID_Tips_300 = StrRight(LabwareID_Tips_300, 4);
                      if (LabwareID_Tips_300 == "0001")
                      {
                        Tip_Carrier_2nd_2 = Translate("2,");
                      }
                      if (LabwareID_Tips_300 == "0002")
                      {
                        Tip_Carrier_2nd_3 = Translate("3,");
                      }
                      if (LabwareID_Tips_300 == "0003")
                      {
                        Tip_Carrier_2nd_4 = Translate("4,");
                      }
                      if (LabwareID_Tips_300 == "0004")
                      {
                        Tip_Carrier_2nd_5 = Translate("5,");
                      }
                    }
                  }
                }
                Tip_Carrier_1st = StrConcat8(Tip_Carrier_1st_1, Tip_Carrier_1st_2, Tip_Carrier_1st_3, Tip_Carrier_1st_4, Tip_Carrier_1st_5, Translate(""), Translate(""), Translate(""));
                StrReplace(Tip_Carrier_1st, Translate("0"), Translate(""));
                Length_Tip_Carrier_1st = StrGetLength(Tip_Carrier_1st);
                if (Length_Tip_Carrier_1st > 1)
                {
                  Length_Tip_Carrier_1st = Length_Tip_Carrier_1st - 1;
                }
                Tip_Carrier_1st = StrLeft(Tip_Carrier_1st, Length_Tip_Carrier_1st);
                Tip_Carrier_2nd = StrConcat8(Tip_Carrier_2nd_1, Tip_Carrier_2nd_2, Tip_Carrier_2nd_3, Tip_Carrier_2nd_4, Tip_Carrier_2nd_5, Translate(""), Translate(""), Translate(""));
                StrReplace(Tip_Carrier_2nd, Translate("0"), Translate(""));
                Length_Tip_Carrier_2nd = StrGetLength(Tip_Carrier_2nd);
                if (Length_Tip_Carrier_2nd > 1)
                {
                  Length_Tip_Carrier_2nd = Length_Tip_Carrier_2nd - 1;
                }
                Tip_Carrier_2nd = StrLeft(Tip_Carrier_2nd, Length_Tip_Carrier_2nd);
                ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              }   /* end if from skip handler if no error */
            }
            else
            {
              ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            }
            ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
          }
          else
          {
            if (file2_Step == "STEP_004")
            {
              if (file2_TipScan == 1)
              {
                onerror goto errLabel_131 ;
                err.Clear();
                ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                errLabel_131 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  dialogHandle_120.SetOutput(Translate("The position of the installed tips differs from the position you set in the Edit Tip Count."), "\n", Translate("Please check the position of the tips."));
                  if( 0 == dialogHandle_120.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_120.ShowOutput(Translate("Tip Install Position Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_120.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  file3.AddField("Tip_Sequence", file3_Tip_Sequence, hslInteger);
                  if( 0 == file3.Open("C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls" + " " + "'Reconstructed Method$'", hslRead) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls", "HxMetEdCompCmd");
                  }
                  if (file1_SimOn == 0)
                  {
                    if (STEP < 4)
                    {
                      if (STEP != 2)
                      {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Full = Use_All_Tips_Full + 1;
                        }
                      }
                    }
                    if (STEP == 6)
                    {
                      if (StepChk_Chk != 0)
                      {
                        Use_All_Tips_Full = Use_All_Tips_Full + 1;
                      }
                    }
                  }
                  {
                    loopCounter1 = 0;
                    while (
                       (file3.Eof() == 0)
                    )
                    {
                      loopCounter1 = loopCounter1 + 1;
                      if( 0 == file3.ReadRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      if (file3_Tip_Sequence == 1)
                      {
                        Use_All_Tips_Full = Use_All_Tips_Full + 1;
                      }
                      if (file3_Tip_Sequence == 3)
                      {
                        Use_300ul_Tips = Use_300ul_Tips + 1;
                      }
                    }
                  }
                  if( 0 != file3.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  file3.RemoveFields();
                  if (Use_All_Tips_Full > 0)
                  {
                    TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Translate("All_Tips_Full_Counter"), ML_STAR, 999);
                    TipsOnDeck_New_Full = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full.GetCount();
                    Trace ("TipsOnDeck_New_Full = ", TipsOnDeck_New_Full);
                  }
                  if (Use_300ul_Tips > 0)
                  {
                    TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("All_300ul_Tips_Counter"), ML_STAR, 999);
                    TipsOnDeck_300 = ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetCount();
                    Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
                  }
                  EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                  Tip_Carrier_3rd = Translate("");
                  if (Use_All_Tips_Part > 0)
                  {
                    Arr_LabwareID_Tips_Part.SetSize(0);
                    SeqGetLabwareIds(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, Arr_LabwareID_Tips_Part);
                    size_Tips_part=Arr_LabwareID_Tips_Part.GetSize();
                    {
                      for(loopCounter_tip_part = 0; loopCounter_tip_part < size_Tips_part;)
                      {
                        loopCounter_tip_part = loopCounter_tip_part + 1;
                        LabwareID_Tips_Part=Arr_LabwareID_Tips_Part.GetAt(loopCounter_tip_part-1);
                        LabwareID_Tips_Part = StrRight(LabwareID_Tips_Part, 4);
                        if (LabwareID_Tips_Part == "0001")
                        {
                        Tip_Carrier_2nd_1 = Translate("1,");
                        }
                        if (LabwareID_Tips_Part == "0002")
                        {
                        Tip_Carrier_1st_1 = Translate("1,");
                        }
                        if (LabwareID_Tips_Part == "0003")
                        {
                        Tip_Carrier_1st_2 = Translate("2,");
                        }
                        if (LabwareID_Tips_Part == "0004")
                        {
                        Tip_Carrier_1st_3 = Translate("3,");
                        }
                        if (LabwareID_Tips_Part == "0005")
                        {
                        Tip_Carrier_1st_4 = Translate("4,");
                        }
                        if (LabwareID_Tips_Part == "0006")
                        {
                        Tip_Carrier_1st_5 = Translate("5,");
                        }
                      }
                    }
                  }
                  if (Use_All_Tips_Full > 0)
                  {
                    Arr_LabwareID_Tips_Full.SetSize(0);
                    SeqGetLabwareIds(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Arr_LabwareID_Tips_Full);
                    size_Tips_Full=Arr_LabwareID_Tips_Full.GetSize();
                    {
                      for(loopCounter_tip_full = 0; loopCounter_tip_full < size_Tips_Full;)
                      {
                        loopCounter_tip_full = loopCounter_tip_full + 1;
                        LabwareID_Tips_Full=Arr_LabwareID_Tips_Full.GetAt(loopCounter_tip_full-1);
                        LabwareID_Tips_Full = StrRight(LabwareID_Tips_Full, 4);
                        if (LabwareID_Tips_Full == "0001")
                        {
                        Tip_Carrier_2nd_1 = Translate("1,");
                        }
                        if (LabwareID_Tips_Full == "0002")
                        {
                        Tip_Carrier_1st_1 = Translate("1,");
                        }
                        if (LabwareID_Tips_Full == "0003")
                        {
                        Tip_Carrier_1st_2 = Translate("2,");
                        }
                        if (LabwareID_Tips_Full == "0004")
                        {
                        Tip_Carrier_1st_3 = Translate("3,");
                        }
                        if (LabwareID_Tips_Full == "0005")
                        {
                        Tip_Carrier_1st_4 = Translate("4,");
                        }
                        if (LabwareID_Tips_Full == "0006")
                        {
                        Tip_Carrier_1st_5 = Translate("5,");
                        }
                        if (LabwareID_Tips_Full == "0007")
                        {
                        Tip_Carrier_3rd = Translate("2");
                        }
                      }
                    }
                  }
                  if (Use_All_Tips_Thinprep > 0)
                  {
                    Arr_LabwareID_Tips_Thinprep.SetSize(0);
                    SeqGetLabwareIds(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Arr_LabwareID_Tips_Thinprep);
                    size_Tips_thinprep=Arr_LabwareID_Tips_Thinprep.GetSize();
                    {
                      for(loopCounter_tip_thinprep = 0; loopCounter_tip_thinprep < size_Tips_thinprep;)
                      {
                        loopCounter_tip_thinprep = loopCounter_tip_thinprep + 1;
                        LabwareID_Tips_Thinprep=Arr_LabwareID_Tips_Thinprep.GetAt(loopCounter_tip_thinprep-1);
                        LabwareID_Tips_Thinprep = StrRight(LabwareID_Tips_Thinprep, 4);
                        if (LabwareID_Tips_Thinprep == "0007")
                        {
                        Tip_Carrier_3rd = Translate("2");
                        }
                      }
                    }
                  }
                  if (Use_300ul_Tips > 0)
                  {
                    Arr_LabwareID_Tips_300.SetSize(0);
                    SeqGetLabwareIds(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Arr_LabwareID_Tips_300);
                    size_Tips_300=Arr_LabwareID_Tips_300.GetSize();
                    {
                      for(loopCounter_tip_300 = 0; loopCounter_tip_300 < size_Tips_300;)
                      {
                        loopCounter_tip_300 = loopCounter_tip_300 + 1;
                        LabwareID_Tips_300=Arr_LabwareID_Tips_300.GetAt(loopCounter_tip_300-1);
                        LabwareID_Tips_300 = StrRight(LabwareID_Tips_300, 4);
                        if (LabwareID_Tips_300 == "0001")
                        {
                        Tip_Carrier_2nd_2 = Translate("2,");
                        }
                        if (LabwareID_Tips_300 == "0002")
                        {
                        Tip_Carrier_2nd_3 = Translate("3,");
                        }
                        if (LabwareID_Tips_300 == "0003")
                        {
                        Tip_Carrier_2nd_4 = Translate("4,");
                        }
                        if (LabwareID_Tips_300 == "0004")
                        {
                        Tip_Carrier_2nd_5 = Translate("5,");
                        }
                      }
                    }
                  }
                  Tip_Carrier_1st = StrConcat8(Tip_Carrier_1st_1, Tip_Carrier_1st_2, Tip_Carrier_1st_3, Tip_Carrier_1st_4, Tip_Carrier_1st_5, Translate(""), Translate(""), Translate(""));
                  StrReplace(Tip_Carrier_1st, Translate("0"), Translate(""));
                  Length_Tip_Carrier_1st = StrGetLength(Tip_Carrier_1st);
                  if (Length_Tip_Carrier_1st > 1)
                  {
                    Length_Tip_Carrier_1st = Length_Tip_Carrier_1st - 1;
                  }
                  Tip_Carrier_1st = StrLeft(Tip_Carrier_1st, Length_Tip_Carrier_1st);
                  Tip_Carrier_2nd = StrConcat8(Tip_Carrier_2nd_1, Tip_Carrier_2nd_2, Tip_Carrier_2nd_3, Tip_Carrier_2nd_4, Tip_Carrier_2nd_5, Translate(""), Translate(""), Translate(""));
                  StrReplace(Tip_Carrier_2nd, Translate("0"), Translate(""));
                  Length_Tip_Carrier_2nd = StrGetLength(Tip_Carrier_2nd);
                  if (Length_Tip_Carrier_2nd > 1)
                  {
                    Length_Tip_Carrier_2nd = Length_Tip_Carrier_2nd - 1;
                  }
                  Tip_Carrier_2nd = StrLeft(Tip_Carrier_2nd, Length_Tip_Carrier_2nd);
                  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                }   /* end if from skip handler if no error */
              }
              else
              {
                ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              }
            }
            else
            {
              if (file2_TipScan == 1)
              {
                onerror goto errLabel_132 ;
                err.Clear();
                ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                errLabel_132 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  dialogHandle_109.SetOutput(Translate("The position of the installed tips differs from the position you set in the Edit Tip Count."), "\n", Translate("Please check the position of the tips."));
                  if( 0 == dialogHandle_109.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_109.ShowOutput(Translate("Tip Install Position Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_109.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  file3.AddField("Tip_Sequence", file3_Tip_Sequence, hslInteger);
                  if( 0 == file3.Open("C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls" + " " + "'Reconstructed Method$'", hslRead) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls", "HxMetEdCompCmd");
                  }
                  if (file1_SimOn == 0)
                  {
                    if (STEP < 4)
                    {
                      if (STEP != 2)
                      {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Full = Use_All_Tips_Full + 1;
                        }
                      }
                    }
                    if (STEP == 6)
                    {
                      if (StepChk_Chk != 0)
                      {
                        Use_All_Tips_Full = Use_All_Tips_Full + 1;
                      }
                    }
                  }
                  {
                    loopCounter1 = 0;
                    while (
                       (file3.Eof() == 0)
                    )
                    {
                      loopCounter1 = loopCounter1 + 1;
                      if( 0 == file3.ReadRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      if (file3_Tip_Sequence == 1)
                      {
                        Use_All_Tips_Full = Use_All_Tips_Full + 1;
                      }
                      if (file3_Tip_Sequence == 3)
                      {
                        Use_300ul_Tips = Use_300ul_Tips + 1;
                      }
                    }
                  }
                  if( 0 != file3.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  file3.RemoveFields();
                  if (Use_All_Tips_Full > 0)
                  {
                    TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Translate("All_Tips_Full_Counter"), ML_STAR, 999);
                    TipsOnDeck_New_Full = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full.GetCount();
                    Trace ("TipsOnDeck_New_Full = ", TipsOnDeck_New_Full);
                  }
                  if (Use_300ul_Tips > 0)
                  {
                    TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("All_300ul_Tips_Counter"), ML_STAR, 999);
                    TipsOnDeck_300 = ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetCount();
                    Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
                  }
                  EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                  Tip_Carrier_3rd = Translate("");
                  if (Use_All_Tips_Part > 0)
                  {
                    Arr_LabwareID_Tips_Part.SetSize(0);
                    SeqGetLabwareIds(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, Arr_LabwareID_Tips_Part);
                    size_Tips_part=Arr_LabwareID_Tips_Part.GetSize();
                    {
                      for(loopCounter_tip_part = 0; loopCounter_tip_part < size_Tips_part;)
                      {
                        loopCounter_tip_part = loopCounter_tip_part + 1;
                        LabwareID_Tips_Part=Arr_LabwareID_Tips_Part.GetAt(loopCounter_tip_part-1);
                        LabwareID_Tips_Part = StrRight(LabwareID_Tips_Part, 4);
                        if (LabwareID_Tips_Part == "0001")
                        {
                        Tip_Carrier_2nd_1 = Translate("1,");
                        }
                        if (LabwareID_Tips_Part == "0002")
                        {
                        Tip_Carrier_1st_1 = Translate("1,");
                        }
                        if (LabwareID_Tips_Part == "0003")
                        {
                        Tip_Carrier_1st_2 = Translate("2,");
                        }
                        if (LabwareID_Tips_Part == "0004")
                        {
                        Tip_Carrier_1st_3 = Translate("3,");
                        }
                        if (LabwareID_Tips_Part == "0005")
                        {
                        Tip_Carrier_1st_4 = Translate("4,");
                        }
                        if (LabwareID_Tips_Part == "0006")
                        {
                        Tip_Carrier_1st_5 = Translate("5,");
                        }
                      }
                    }
                  }
                  if (Use_All_Tips_Full > 0)
                  {
                    Arr_LabwareID_Tips_Full.SetSize(0);
                    SeqGetLabwareIds(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Arr_LabwareID_Tips_Full);
                    size_Tips_Full=Arr_LabwareID_Tips_Full.GetSize();
                    {
                      for(loopCounter_tip_full = 0; loopCounter_tip_full < size_Tips_Full;)
                      {
                        loopCounter_tip_full = loopCounter_tip_full + 1;
                        LabwareID_Tips_Full=Arr_LabwareID_Tips_Full.GetAt(loopCounter_tip_full-1);
                        LabwareID_Tips_Full = StrRight(LabwareID_Tips_Full, 4);
                        if (LabwareID_Tips_Full == "0001")
                        {
                        Tip_Carrier_2nd_1 = Translate("1,");
                        }
                        if (LabwareID_Tips_Full == "0002")
                        {
                        Tip_Carrier_1st_1 = Translate("1,");
                        }
                        if (LabwareID_Tips_Full == "0003")
                        {
                        Tip_Carrier_1st_2 = Translate("2,");
                        }
                        if (LabwareID_Tips_Full == "0004")
                        {
                        Tip_Carrier_1st_3 = Translate("3,");
                        }
                        if (LabwareID_Tips_Full == "0005")
                        {
                        Tip_Carrier_1st_4 = Translate("4,");
                        }
                        if (LabwareID_Tips_Full == "0006")
                        {
                        Tip_Carrier_1st_5 = Translate("5,");
                        }
                        if (LabwareID_Tips_Full == "0007")
                        {
                        Tip_Carrier_3rd = Translate("2");
                        }
                      }
                    }
                  }
                  if (Use_All_Tips_Thinprep > 0)
                  {
                    Arr_LabwareID_Tips_Thinprep.SetSize(0);
                    SeqGetLabwareIds(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Arr_LabwareID_Tips_Thinprep);
                    size_Tips_thinprep=Arr_LabwareID_Tips_Thinprep.GetSize();
                    {
                      for(loopCounter_tip_thinprep = 0; loopCounter_tip_thinprep < size_Tips_thinprep;)
                      {
                        loopCounter_tip_thinprep = loopCounter_tip_thinprep + 1;
                        LabwareID_Tips_Thinprep=Arr_LabwareID_Tips_Thinprep.GetAt(loopCounter_tip_thinprep-1);
                        LabwareID_Tips_Thinprep = StrRight(LabwareID_Tips_Thinprep, 4);
                        if (LabwareID_Tips_Thinprep == "0007")
                        {
                        Tip_Carrier_3rd = Translate("2");
                        }
                      }
                    }
                  }
                  if (Use_300ul_Tips > 0)
                  {
                    Arr_LabwareID_Tips_300.SetSize(0);
                    SeqGetLabwareIds(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Arr_LabwareID_Tips_300);
                    size_Tips_300=Arr_LabwareID_Tips_300.GetSize();
                    {
                      for(loopCounter_tip_300 = 0; loopCounter_tip_300 < size_Tips_300;)
                      {
                        loopCounter_tip_300 = loopCounter_tip_300 + 1;
                        LabwareID_Tips_300=Arr_LabwareID_Tips_300.GetAt(loopCounter_tip_300-1);
                        LabwareID_Tips_300 = StrRight(LabwareID_Tips_300, 4);
                        if (LabwareID_Tips_300 == "0001")
                        {
                        Tip_Carrier_2nd_2 = Translate("2,");
                        }
                        if (LabwareID_Tips_300 == "0002")
                        {
                        Tip_Carrier_2nd_3 = Translate("3,");
                        }
                        if (LabwareID_Tips_300 == "0003")
                        {
                        Tip_Carrier_2nd_4 = Translate("4,");
                        }
                        if (LabwareID_Tips_300 == "0004")
                        {
                        Tip_Carrier_2nd_5 = Translate("5,");
                        }
                      }
                    }
                  }
                  Tip_Carrier_1st = StrConcat8(Tip_Carrier_1st_1, Tip_Carrier_1st_2, Tip_Carrier_1st_3, Tip_Carrier_1st_4, Tip_Carrier_1st_5, Translate(""), Translate(""), Translate(""));
                  StrReplace(Tip_Carrier_1st, Translate("0"), Translate(""));
                  Length_Tip_Carrier_1st = StrGetLength(Tip_Carrier_1st);
                  if (Length_Tip_Carrier_1st > 1)
                  {
                    Length_Tip_Carrier_1st = Length_Tip_Carrier_1st - 1;
                  }
                  Tip_Carrier_1st = StrLeft(Tip_Carrier_1st, Length_Tip_Carrier_1st);
                  Tip_Carrier_2nd = StrConcat8(Tip_Carrier_2nd_1, Tip_Carrier_2nd_2, Tip_Carrier_2nd_3, Tip_Carrier_2nd_4, Tip_Carrier_2nd_5, Translate(""), Translate(""), Translate(""));
                  StrReplace(Tip_Carrier_2nd, Translate("0"), Translate(""));
                  Length_Tip_Carrier_2nd = StrGetLength(Tip_Carrier_2nd);
                  if (Length_Tip_Carrier_2nd > 1)
                  {
                    Length_Tip_Carrier_2nd = Length_Tip_Carrier_2nd - 1;
                  }
                  Tip_Carrier_2nd = StrLeft(Tip_Carrier_2nd, Length_Tip_Carrier_2nd);
                  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                }   /* end if from skip handler if no error */
              }
              else
              {
                ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              }
            }
            if (file1_SimOn == 0)
            {
              if (file2_Plate == "PLATE_013")
              {
                if (file2_BarcodeDWP == 0)
                {
                  Position_Barcode_Plate = Translate("2");
                }
                else
                {
                  Position_Barcode_Plate = Translate("1,2");
                }
                Barcode_Error_Flag = 1;
                {
                  while (Barcode_Error_Flag == 1)
                  {
                    onerror goto errLabel_133 ;
                    err.Clear();
                    {
                      	variable arrRetValues[];
                      	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                      	Return_Barcode = arrRetValues[3];
                    }
                    if (Position_Barcode_Plate != "")
                    {
                      MECC::TraceComment(Translate("\"barcodeplate.txt\" file has been created."));
                    }
                    Chk_BarcodePos1 = StrFind(Position_Barcode_Plate, Translate("1"));
                    Chk_BarcodePos2 = StrFind(Position_Barcode_Plate, Translate("2"));
                    if (Chk_BarcodePos1 != -1)
                    {
                      Return_BarcodePos1 = StepReturn::GetBarcode(1, Return_Barcode);
                      DWP_Barcodemask = StrLeft(Return_BarcodePos1, 8);
                      if (DWP_Barcodemask != "SDP0096B")
                      {
                        ErrRaise(109, Translate("DWP barcode mask error"));
                      }
                      else
                      {
                        DWP_BarcodeCnt = StrGetLength(Return_BarcodePos1);
                        if (DWP_BarcodeCnt != 19)
                        {
                        ErrRaise(109, Translate("DWP barcode mask error"));
                        }
                      }
                    }
                    if (Chk_BarcodePos2 != -1)
                    {
                      Return_BarcodePos2 = StepReturn::GetBarcode(2, Return_Barcode);
                      Plate1_BarcodeCnt = StrGetLength(Return_BarcodePos2);
                      if (Plate1_BarcodeCnt != 22)
                      {
                        ErrRaise(109, Translate("Qiagen EL tube barcode mask error"));
                      }
                    }
                    if (Position_Barcode_Plate != "")
                    {
                      Renewal_Flag = 0;
                      {
                        while (Renewal_Flag == 0)
                        {
                        file5.AddField("Renewal_Flag", Renewal_Flag, hslInteger);
                        file5.AddField("Dupli_Flag", Dupli_Flag, hslInteger);
                        file5.SetDelimiter(",");
                        if( 0 == file5.Open("C:\\Seegene_Method_Setting\\Duplibarcode.csv", hslAppend) )
                        {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\Duplibarcode.csv", "HxMetEdCompCmd");
                        }
                        file5.Seek(1, hslLast);
                        if( 0 == file5.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if( 0 != file5.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file5.RemoveFields();
                        if (Renewal_Flag == 1)
                        {
                        if (Dupli_Flag >= 1)
                        {
                        if (Dupli_Flag == 1)
                        {
                        dialogHandle_28.SetOutput(Translate("Plate barcode information already used."), "\n", Translate("Do you want to continue?"));
                        if( 0 == dialogHandle_28.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        Return_ChkBarcode = dialogHandle_28.ShowOutput(Translate("Invalid Barcode Information"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_28.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (Return_ChkBarcode == 7)
                        {
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_32.SetOutput(Translate("Please put the plate in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_32.ShowOutput(Translate("Invalid Barcode Information"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        }
                        else
                        {
                        Barcode_Error_Flag = 0;
                        }
                        }
                        if (Dupli_Flag == 2)
                        {
                        dialogHandle_27.SetOutput(Translate("Plate barcode information already used."), "\n", Translate("Do you want to continue?"));
                        if( 0 == dialogHandle_27.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        Return_ChkBarcode = dialogHandle_27.ShowOutput(Translate("Invalid Barcode Information"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_27.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (Return_ChkBarcode == 7)
                        {
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_29.SetOutput(Translate("Please put the plate in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_29.ShowOutput(Translate("Invalid Barcode Information"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        }
                        else
                        {
                        Barcode_Error_Flag = 0;
                        }
                        }
                        if (Dupli_Flag == 3)
                        {
                        dialogHandle_31.SetOutput(Translate("Plate barcode information already used."), "\n", Translate("Do you want to continue?"));
                        if( 0 == dialogHandle_31.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        Return_ChkBarcode = dialogHandle_31.ShowOutput(Translate("Invalid Barcode Information"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_31.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (Return_ChkBarcode == 7)
                        {
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_30.SetOutput(Translate("Please put the plate in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_30.ShowOutput(Translate("Invalid Barcode Information"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        }
                        else
                        {
                        Barcode_Error_Flag = 0;
                        }
                        }
                        }
                        else
                        {
                        Barcode_Error_Flag = 0;
                        }
                        Renewal_Flag = 0;
                        Dupli_Flag = 0;
                        file5.AddField("Renewal_Flag", Renewal_Flag, hslInteger);
                        file5.AddField("Dupli_Flag", Dupli_Flag, hslInteger);
                        file5.SetDelimiter(",");
                        if( 0 == file5.Open("C:\\Seegene_Method_Setting\\Duplibarcode.csv", hslAppend) )
                        {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\Duplibarcode.csv", "HxMetEdCompCmd");
                        }
                        if( 0 == file5.WriteRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if( 0 != file5.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file5.RemoveFields();
                        break;
                        }
                        }
                      }
                    }
                    errLabel_133 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      Barcode_Error_Flag = 1;
                      dialogHandle_33.SetOutput(Translate("The DWP or NA plate with proper barcode is not installed."), "\n", Translate("Click OK to unload the carrier and to place the plate in the correct position."));
                      if( 0 == dialogHandle_33.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                      {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      dialogHandle_33.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                      if( 0 == dialogHandle_33.PlaySound("") )
                      {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      dialogHandle_22.SetOutput(Translate("Please put the plate in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                      dialogHandle_22.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                    }   /* end if from skip handler if no error */
                  }
                }
              }
              else
              {
                Plate_Quantity_Flag = 0;
                if (Plate_Quantity == 5)
                {
                  Plate_Quantity = 1;
                  Plate_Quantity_Flag = 1;
                }
                if (file2_Set_No == 2)
                {
                  if (Separate_No > 48)
                  {
                    Plate_Quantity = 2;
                  }
                  else
                  {
                    Plate_Quantity = 1;
                  }
                }
                if (file2_Set_No == 3)
                {
                  if (Separate_No > 32)
                  {
                    Plate_Quantity = 2;
                  }
                  else
                  {
                    Plate_Quantity = 1;
                  }
                }
                if (file2_PlateOrder == 1)
                {
                  if (file2_BarcodeDWP == 0)
                  {
                    if (file2_BarcodePlate == 0)
                    {
                      Position_Barcode_Plate = Translate("");
                    }
                    else
                    {
                      if (Plate_Quantity >= 2)
                      {
                        Position_Barcode_Plate = Translate("2,3");
                      }
                      else
                      {
                        Position_Barcode_Plate = Translate("2");
                      }
                    }
                  }
                  else
                  {
                    if (file2_BarcodePlate == 0)
                    {
                      Position_Barcode_Plate = Translate("1");
                    }
                    else
                    {
                      if (Plate_Quantity >= 2)
                      {
                        Position_Barcode_Plate = Translate("1,2,3");
                      }
                      else
                      {
                        Position_Barcode_Plate = Translate("1,2");
                      }
                    }
                  }
                }
                else
                {
                  if (file2_BarcodeDWP == 0)
                  {
                    if (file2_BarcodePlate == 0)
                    {
                      Position_Barcode_Plate = Translate("");
                    }
                    else
                    {
                      if (Plate_Quantity == 4)
                      {
                        Position_Barcode_Plate = Translate("2,3");
                      }
                      else
                      {
                        Position_Barcode_Plate = Translate("2");
                      }
                    }
                  }
                  else
                  {
                    if (file2_BarcodePlate == 0)
                    {
                      Position_Barcode_Plate = Translate("1");
                    }
                    else
                    {
                      if (Plate_Quantity == 4)
                      {
                        Position_Barcode_Plate = Translate("1,2,3");
                      }
                      else
                      {
                        Position_Barcode_Plate = Translate("1,2");
                      }
                    }
                  }
                }
                Barcode_Error_Flag = 1;
                {
                  while (Barcode_Error_Flag == 1)
                  {
                    onerror goto errLabel_134 ;
                    err.Clear();
                    file5.AddField("Renewal_Flag", Renewal_Flag, hslInteger);
                    file5.AddField("Dupli_Flag", Dupli_Flag, hslInteger);
                    file5.SetDelimiter(",");
                    if( 0 == file5.Open("C:\\Seegene_Method_Setting\\Duplibarcode.csv", hslAppend) )
                    {
                          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\Duplibarcode.csv", "HxMetEdCompCmd");
                    }
                    Renewal_Flag = 0;
                    Dupli_Flag = 0;
                    if( 0 == file5.WriteRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    if( 0 != file5.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    file5.RemoveFields();
                    {
                      	variable arrRetValues[];
                      	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                      	Return_Barcode = arrRetValues[3];
                    }
                    if (Position_Barcode_Plate != "")
                    {
                      MECC::TraceComment(Translate("\"barcodeplate.txt\" file has been created."));
                    }
                    else
                    {
                      Barcode_Error_Flag = 0;
                    }
                    Chk_BarcodePos1 = StrFind(Position_Barcode_Plate, Translate("1"));
                    Chk_BarcodePos2 = StrFind(Position_Barcode_Plate, Translate("2"));
                    Chk_BarcodePos3 = StrFind(Position_Barcode_Plate, Translate("3"));
                    if (Chk_BarcodePos1 != -1)
                    {
                      Return_BarcodePos1 = StepReturn::GetBarcode(1, Return_Barcode);
                      DWP_Barcodemask = StrLeft(Return_BarcodePos1, 8);
                      if (DWP_Barcodemask != "SDP0096B")
                      {
                        ErrRaise(109, Translate("DWP barcode mask error"));
                      }
                      else
                      {
                        DWP_BarcodeCnt = StrGetLength(Return_BarcodePos1);
                        if (DWP_BarcodeCnt != 19)
                        {
                        ErrRaise(109, Translate("DWP barcode mask error"));
                        }
                      }
                    }
                    if (Chk_BarcodePos2 != -1)
                    {
                      Return_BarcodePos2 = StepReturn::GetBarcode(2, Return_Barcode);
                      Plate1_BarcodeCnt = StrGetLength(Return_BarcodePos2);
                      if (Plate1_BarcodeCnt != 7)
                      {
                        ErrRaise(109, Translate("DWP barcode mask error"));
                      }
                    }
                    if (Chk_BarcodePos3 != -1)
                    {
                      Return_BarcodePos3 = StepReturn::GetBarcode(3, Return_Barcode);
                      Plate2_BarcodeCnt = StrGetLength(Return_BarcodePos3);
                      if (Plate2_BarcodeCnt != 7)
                      {
                        ErrRaise(109, Translate("DWP barcode mask error"));
                      }
                    }
                    if (Position_Barcode_Plate != "")
                    {
                      Renewal_Flag = 0;
                      {
                        while (Renewal_Flag == 0)
                        {
                        file5.AddField("Renewal_Flag", Renewal_Flag, hslInteger);
                        file5.AddField("Dupli_Flag", Dupli_Flag, hslInteger);
                        file5.SetDelimiter(",");
                        if( 0 == file5.Open("C:\\Seegene_Method_Setting\\Duplibarcode.csv", hslAppend) )
                        {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\Duplibarcode.csv", "HxMetEdCompCmd");
                        }
                        file5.Seek(1, hslLast);
                        if( 0 == file5.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if( 0 != file5.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file5.RemoveFields();
                        if (Renewal_Flag == 1)
                        {
                        if (Dupli_Flag >= 1)
                        {
                        if (Dupli_Flag == 1)
                        {
                        dialogHandle_24.SetOutput(Translate("DWP barcode information already used."), "\n", Translate("Do you want to continue?"));
                        if( 0 == dialogHandle_24.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        Return_ChkBarcode = dialogHandle_24.ShowOutput(Translate("Invalid Barcode Information"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_24.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (Return_ChkBarcode == 7)
                        {
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_26.SetOutput(Translate("Please put the plate in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_26.ShowOutput(Translate("Invalid Barcode Information"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        }
                        else
                        {
                        Barcode_Error_Flag = 0;
                        }
                        }
                        if (Dupli_Flag == 2)
                        {
                        dialogHandle_23.SetOutput(Translate("PCR plate barcode information already used."), "\n", Translate("Do you want to continue?"));
                        if( 0 == dialogHandle_23.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        Return_ChkBarcode = dialogHandle_23.ShowOutput(Translate("Invalid Barcode Information"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_23.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (Return_ChkBarcode == 7)
                        {
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_19.SetOutput(Translate("Please put the plate in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_19.ShowOutput(Translate("Invalid Barcode Information"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        }
                        else
                        {
                        Barcode_Error_Flag = 0;
                        }
                        }
                        if (Dupli_Flag == 3)
                        {
                        dialogHandle_18.SetOutput(Translate("DWP and PCR plate barcode information already used."), "\n", Translate("Do you want to continue?"));
                        if( 0 == dialogHandle_18.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        Return_ChkBarcode = dialogHandle_18.ShowOutput(Translate("Invalid Barcode Information"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_18.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (Return_ChkBarcode == 7)
                        {
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_25.SetOutput(Translate("Please put the plate in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_25.ShowOutput(Translate("Invalid Barcode Information"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        }
                        else
                        {
                        Barcode_Error_Flag = 0;
                        }
                        }
                        }
                        else
                        {
                        Barcode_Error_Flag = 0;
                        }
                        Renewal_Flag = 0;
                        Dupli_Flag = 0;
                        file5.AddField("Renewal_Flag", Renewal_Flag, hslInteger);
                        file5.AddField("Dupli_Flag", Dupli_Flag, hslInteger);
                        file5.SetDelimiter(",");
                        if( 0 == file5.Open("C:\\Seegene_Method_Setting\\Duplibarcode.csv", hslAppend) )
                        {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\Duplibarcode.csv", "HxMetEdCompCmd");
                        }
                        if( 0 == file5.WriteRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if( 0 != file5.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file5.RemoveFields();
                        break;
                        }
                        }
                      }
                    }
                    errLabel_134 : {}
                    onerror goto 0;
                    if (err.GetId() != 0)   /* skip handler if no error */
                    {
                      Barcode_Error_Flag = 1;
                      dialogHandle_21.SetOutput(Translate("The DWP or PCR plate with proper barcode is not installed."), "\n", Translate("Click OK to unload the carrier and to place the plate in the correct position."));
                      if( 0 == dialogHandle_21.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                      {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      dialogHandle_21.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                      if( 0 == dialogHandle_21.PlaySound("") )
                      {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      dialogHandle_20.SetOutput(Translate("Please put the plate in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                      dialogHandle_20.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                      ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                    }   /* end if from skip handler if no error */
                  }
                }
                if (Plate_Quantity_Flag == 1)
                {
                  Plate_Quantity = 5;
                }
              }
            }
            else
            {
              ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            }
            if (file2_TipScan == 1)
            {
              onerror goto errLabel_135 ;
              err.Clear();
              ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              errLabel_135 : {}
              onerror goto 0;
              if (err.GetId() != 0)   /* skip handler if no error */
              {
                dialogHandle_116.SetOutput(Translate("The position of the installed tips differs from the position you set in the Edit Tip Count."), "\n", Translate("Please check the position of the tips."));
                if( 0 == dialogHandle_116.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_116.ShowOutput(Translate("Tip Install Position Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_116.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                file3.AddField("Tip_Sequence", file3_Tip_Sequence, hslInteger);
                if( 0 == file3.Open("C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls" + " " + "'Reconstructed Method$'", hslRead) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls", "HxMetEdCompCmd");
                }
                if (fileB_Thinprep == "true")
                {
                  if (file4_Step_Name == "PK_Dispense")
                  {
                    if (file1_SimOn == 0)
                    {
                      if (STEP < 4)
                      {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                      }
                      if (STEP == 6)
                      {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                      }
                    }
                  }
                  else
                  {
                    if (file4_Step_Name == "IC_Dispense_1")
                    {
                      if (STEP < 4)
                      {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                      }
                      if (STEP == 6)
                      {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                      }
                    }
                    else
                    {
                      if (file4_Step_Name == "Move_DWP_from_StartingPosition_to_Heater")
                      {
                        if (STEP < 4)
                        {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if (STEP == 6)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                      }
                      else
                      {
                        if (file4_Step_Name == "Lysis_Buffer_Dispense")
                        {
                        if (STEP < 4)
                        {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if (STEP == 6)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        else
                        {
                        if (file4_Step_Name == "Sample_Dispense")
                        {
                        if (STEP < 4)
                        {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if (STEP == 6)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        else
                        {
                        if (STEP < 4)
                        {
                        if (STEP != 2)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Part = Use_All_Tips_Part + 1;
                        StepChk_Thinprep_AfterSample = 1;
                        }
                        }
                        }
                        if (STEP == 6)
                        {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Part = Use_All_Tips_Part + 1;
                        StepChk_Thinprep_AfterSample = 1;
                        }
                        }
                        }
                        }
                      }
                    }
                  }
                  if (file4_Step_Name == "PK_Dispense")
                  {
                    {
                      loopCounter1 = 0;
                      while (
                         (file3.Eof() == 0)
                      )
                      {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 2)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                      }
                    }
                    if( 0 != file3.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    file3.RemoveFields();
                    if (Use_All_Tips_Thinprep > 0)
                    {
                      TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                      TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                      Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
                    }
                    EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                  }
                  else
                  {
                    if (file4_Step_Name == "IC_Dispense_1")
                    {
                      {
                        loopCounter1 = 0;
                        while (
                           (file3.Eof() == 0)
                        )
                        {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 2)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                      }
                      if( 0 != file3.Close() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      file3.RemoveFields();
                      if (Use_All_Tips_Thinprep > 0)
                      {
                        TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                        TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                        Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
                      }
                      EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                    }
                    else
                    {
                      if (file4_Step_Name == "Move_DWP_from_StartingPosition_to_Heater")
                      {
                        {
                        loopCounter1 = 0;
                        while (
                           (file3.Eof() == 0)
                        )
                        {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 2)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if( 0 != file3.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file3.RemoveFields();
                        if (Use_All_Tips_Thinprep > 0)
                        {
                        TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                        TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                        Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
                        }
                        EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                      }
                      else
                      {
                        if (file4_Step_Name == "Lysis_Buffer_Dispense")
                        {
                        {
                        loopCounter1 = 0;
                        while (
                           (file3.Eof() == 0)
                        )
                        {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 2)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if( 0 != file3.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file3.RemoveFields();
                        if (Use_All_Tips_Thinprep > 0)
                        {
                        TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                        TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                        Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
                        }
                        EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                        }
                        else
                        {
                        if (file4_Step_Name == "Sample_Dispense")
                        {
                        {
                        loopCounter1 = 0;
                        while (
                           (file3.Eof() == 0)
                        )
                        {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 2)
                        {
                        Use_All_Tips_Thinprep = Use_All_Tips_Thinprep + 1;
                        }
                        }
                        }
                        if( 0 != file3.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file3.RemoveFields();
                        if (Use_All_Tips_Thinprep > 0)
                        {
                        TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR, 999);
                        TipsOnDeck_Thinprep = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep.GetCount();
                        Trace ("TipsOnDeck_Thinprep = ", TipsOnDeck_Thinprep);
                        }
                        EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                        }
                        else
                        {
                        {
                        loopCounter1 = 0;
                        while (
                           (file3.Eof() == 0)
                        )
                        {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file3.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file3_Tip_Sequence == 1)
                        {
                        Use_All_Tips_Part = Use_All_Tips_Part + 1;
                        }
                        if (file3_Tip_Sequence == 3)
                        {
                        Use_300ul_Tips = Use_300ul_Tips + 1;
                        }
                        }
                        }
                        if( 0 != file3.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        file3.RemoveFields();
                        if (Use_All_Tips_Part > 0)
                        {
                        TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, Translate("All_Tips_Part_Counter"), ML_STAR, 999);
                        TipsOnDeck_New_Part = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part.GetCount();
                        Trace ("TipsOnDeck_New_Part = ", TipsOnDeck_New_Part);
                        }
                        if (Use_300ul_Tips > 0)
                        {
                        TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("All_300ul_Tips_Counter"), ML_STAR, 999);
                        TipsOnDeck_300 = ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetCount();
                        Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
                        }
                        EXTRACTION_STARLET_V6::Check_Tips_Thinprep(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_All_Tips_Part, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, file1_SimOn, STEP, StepChk_Ctrdg_Flag);
                        }
                        }
                      }
                    }
                  }
                }
                else
                {
                  if (file1_SimOn == 0)
                  {
                    if (STEP < 4)
                    {
                      if (STEP != 2)
                      {
                        if (StepChk_Chk != 0)
                        {
                        Use_All_Tips_Full = Use_All_Tips_Full + 1;
                        }
                      }
                    }
                    if (STEP == 6)
                    {
                      if (StepChk_Chk != 0)
                      {
                        Use_All_Tips_Full = Use_All_Tips_Full + 1;
                      }
                    }
                  }
                  {
                    loopCounter1 = 0;
                    while (
                       (file3.Eof() == 0)
                    )
                    {
                      loopCounter1 = loopCounter1 + 1;
                      if( 0 == file3.ReadRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      if (file3_Tip_Sequence == 1)
                      {
                        Use_All_Tips_Full = Use_All_Tips_Full + 1;
                      }
                      if (file3_Tip_Sequence == 3)
                      {
                        Use_300ul_Tips = Use_300ul_Tips + 1;
                      }
                    }
                  }
                  if( 0 != file3.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  file3.RemoveFields();
                  if (Use_All_Tips_Full > 0)
                  {
                    TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Translate("All_Tips_Full_Counter"), ML_STAR, 999);
                    TipsOnDeck_New_Full = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full.GetCount();
                    Trace ("TipsOnDeck_New_Full = ", TipsOnDeck_New_Full);
                  }
                  if (Use_300ul_Tips > 0)
                  {
                    TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("All_300ul_Tips_Counter"), ML_STAR, 999);
                    TipsOnDeck_300 = ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetCount();
                    Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
                  }
                  EXTRACTION_STARLET_V6::Check_Tips(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Use_All_Tips_Thinprep, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Use_All_Tips_Full, file1_SimOn, STEP, fileB_Thinprep, STARMag_Remain, Used_IC_No, StepChk_PKBead_Flag, StepChk_IC_Flag, StepChk_Bead_Flag, StepChk_Ctrdg_Flag, file2_Extraction_Kit);
                }
                Tip_Carrier_3rd = Translate("");
                if (Use_All_Tips_Part > 0)
                {
                  Arr_LabwareID_Tips_Part.SetSize(0);
                  SeqGetLabwareIds(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, Arr_LabwareID_Tips_Part);
                  size_Tips_part=Arr_LabwareID_Tips_Part.GetSize();
                  {
                    for(loopCounter_tip_part = 0; loopCounter_tip_part < size_Tips_part;)
                    {
                      loopCounter_tip_part = loopCounter_tip_part + 1;
                      LabwareID_Tips_Part=Arr_LabwareID_Tips_Part.GetAt(loopCounter_tip_part-1);
                      LabwareID_Tips_Part = StrRight(LabwareID_Tips_Part, 4);
                      if (LabwareID_Tips_Part == "0001")
                      {
                        Tip_Carrier_2nd_1 = Translate("1,");
                      }
                      if (LabwareID_Tips_Part == "0002")
                      {
                        Tip_Carrier_1st_1 = Translate("1,");
                      }
                      if (LabwareID_Tips_Part == "0003")
                      {
                        Tip_Carrier_1st_2 = Translate("2,");
                      }
                      if (LabwareID_Tips_Part == "0004")
                      {
                        Tip_Carrier_1st_3 = Translate("3,");
                      }
                      if (LabwareID_Tips_Part == "0005")
                      {
                        Tip_Carrier_1st_4 = Translate("4,");
                      }
                      if (LabwareID_Tips_Part == "0006")
                      {
                        Tip_Carrier_1st_5 = Translate("5,");
                      }
                    }
                  }
                }
                if (Use_All_Tips_Full > 0)
                {
                  Arr_LabwareID_Tips_Full.SetSize(0);
                  SeqGetLabwareIds(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Arr_LabwareID_Tips_Full);
                  size_Tips_Full=Arr_LabwareID_Tips_Full.GetSize();
                  {
                    for(loopCounter_tip_full = 0; loopCounter_tip_full < size_Tips_Full;)
                    {
                      loopCounter_tip_full = loopCounter_tip_full + 1;
                      LabwareID_Tips_Full=Arr_LabwareID_Tips_Full.GetAt(loopCounter_tip_full-1);
                      LabwareID_Tips_Full = StrRight(LabwareID_Tips_Full, 4);
                      if (LabwareID_Tips_Full == "0001")
                      {
                        Tip_Carrier_2nd_1 = Translate("1,");
                      }
                      if (LabwareID_Tips_Full == "0002")
                      {
                        Tip_Carrier_1st_1 = Translate("1,");
                      }
                      if (LabwareID_Tips_Full == "0003")
                      {
                        Tip_Carrier_1st_2 = Translate("2,");
                      }
                      if (LabwareID_Tips_Full == "0004")
                      {
                        Tip_Carrier_1st_3 = Translate("3,");
                      }
                      if (LabwareID_Tips_Full == "0005")
                      {
                        Tip_Carrier_1st_4 = Translate("4,");
                      }
                      if (LabwareID_Tips_Full == "0006")
                      {
                        Tip_Carrier_1st_5 = Translate("5,");
                      }
                      if (LabwareID_Tips_Full == "0007")
                      {
                        Tip_Carrier_3rd = Translate("2");
                      }
                    }
                  }
                }
                if (Use_All_Tips_Thinprep > 0)
                {
                  Arr_LabwareID_Tips_Thinprep.SetSize(0);
                  SeqGetLabwareIds(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Arr_LabwareID_Tips_Thinprep);
                  size_Tips_thinprep=Arr_LabwareID_Tips_Thinprep.GetSize();
                  {
                    for(loopCounter_tip_thinprep = 0; loopCounter_tip_thinprep < size_Tips_thinprep;)
                    {
                      loopCounter_tip_thinprep = loopCounter_tip_thinprep + 1;
                      LabwareID_Tips_Thinprep=Arr_LabwareID_Tips_Thinprep.GetAt(loopCounter_tip_thinprep-1);
                      LabwareID_Tips_Thinprep = StrRight(LabwareID_Tips_Thinprep, 4);
                      if (LabwareID_Tips_Thinprep == "0007")
                      {
                        Tip_Carrier_3rd = Translate("2");
                      }
                    }
                  }
                }
                if (Use_300ul_Tips > 0)
                {
                  Arr_LabwareID_Tips_300.SetSize(0);
                  SeqGetLabwareIds(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Arr_LabwareID_Tips_300);
                  size_Tips_300=Arr_LabwareID_Tips_300.GetSize();
                  {
                    for(loopCounter_tip_300 = 0; loopCounter_tip_300 < size_Tips_300;)
                    {
                      loopCounter_tip_300 = loopCounter_tip_300 + 1;
                      LabwareID_Tips_300=Arr_LabwareID_Tips_300.GetAt(loopCounter_tip_300-1);
                      LabwareID_Tips_300 = StrRight(LabwareID_Tips_300, 4);
                      if (LabwareID_Tips_300 == "0001")
                      {
                        Tip_Carrier_2nd_2 = Translate("2,");
                      }
                      if (LabwareID_Tips_300 == "0002")
                      {
                        Tip_Carrier_2nd_3 = Translate("3,");
                      }
                      if (LabwareID_Tips_300 == "0003")
                      {
                        Tip_Carrier_2nd_4 = Translate("4,");
                      }
                      if (LabwareID_Tips_300 == "0004")
                      {
                        Tip_Carrier_2nd_5 = Translate("5,");
                      }
                    }
                  }
                }
                Tip_Carrier_1st = StrConcat8(Tip_Carrier_1st_1, Tip_Carrier_1st_2, Tip_Carrier_1st_3, Tip_Carrier_1st_4, Tip_Carrier_1st_5, Translate(""), Translate(""), Translate(""));
                StrReplace(Tip_Carrier_1st, Translate("0"), Translate(""));
                Length_Tip_Carrier_1st = StrGetLength(Tip_Carrier_1st);
                if (Length_Tip_Carrier_1st > 1)
                {
                  Length_Tip_Carrier_1st = Length_Tip_Carrier_1st - 1;
                }
                Tip_Carrier_1st = StrLeft(Tip_Carrier_1st, Length_Tip_Carrier_1st);
                Tip_Carrier_2nd = StrConcat8(Tip_Carrier_2nd_1, Tip_Carrier_2nd_2, Tip_Carrier_2nd_3, Tip_Carrier_2nd_4, Tip_Carrier_2nd_5, Translate(""), Translate(""), Translate(""));
                StrReplace(Tip_Carrier_2nd, Translate("0"), Translate(""));
                Length_Tip_Carrier_2nd = StrGetLength(Tip_Carrier_2nd);
                if (Length_Tip_Carrier_2nd > 1)
                {
                  Length_Tip_Carrier_2nd = Length_Tip_Carrier_2nd - 1;
                }
                Tip_Carrier_2nd = StrLeft(Tip_Carrier_2nd, Length_Tip_Carrier_2nd);
                ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              }   /* end if from skip handler if no error */
            }
            else
            {
              ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            }
            ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
          }
          MECC::TraceComment(Translate("********************* Check DWP *********************"));
          if (STEP < 7)
          {
            if (file2_Product_No != "PRODUCT_EXT_016")
            {
              if (file2_Product_No != "PRODUCT_EXT_019")
              {
                if (iSwap == 0)
                {
                  PlateExist_Error_Flag = 1;
                  {
                    while (PlateExist_Error_Flag == 1)
                    {
                      onerror goto errLabel_136 ;
                      err.Clear();
                      if (file2_Step == "STEP_002")
                      {
                        if (file2_Tube == "TUBE_011")
                        {
                        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
                        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
                        }
                      }
                      else
                      {
                        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
                        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
                      }
                      PlateExist_Error_Flag = 0;
                      errLabel_136 : {}
                      onerror goto 0;
                      if (err.GetId() != 0)   /* skip handler if no error */
                      {
                        PlateExist_Error_Flag = 1;
                        ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
                        dialogHandle_93.SetOutput(Translate("The DWP is not installed."), "\n", Translate("Click OK to unload the carrier and to place the plate in the correct position."));
                        if( 0 == dialogHandle_93.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_93.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_93.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_96.SetOutput(Translate("Please put the plate in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_96.ShowOutput(Translate("Plate Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                      }   /* end if from skip handler if no error */
                    }
                  }
                  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                }
              }
            }
          }
          if (STEP < 7)
          {
            if (STEP != 2)
            {
              if (file4_Seq_Shaker_0 == 1796)
              {
                EXTRACTION_STARLET_V6::Move_DWP(ML_STAR, seq_DWP96, seq_DWP96_HHS, file1_SimOn, iSwap, ML_STAR.COREGripTool, Seegene_2Reagent50mLx6_1DWP_2PCR_R01_0001, Seegene_1HHS_1Magnet_1Tip_2Tube_R01_0001, HHS1);
              }
              if (file4_Seq_Shaker_0 == 1896)
              {
                EXTRACTION_STARLET_V6::Move_DWP(ML_STAR, seq_DWP96, seq_DWP96_Magnet, file1_SimOn, iSwap, ML_STAR.COREGripTool, Seegene_2Reagent50mLx6_1DWP_2PCR_R01_0001, Seegene_1HHS_1Magnet_1Tip_2Tube_R01_0001, HHS1);
              }
            }
            else
            {
              if (TubeType == 11)
              {
                EXTRACTION_STARLET_V6::Move_DWP(ML_STAR, seq_DWP96, seq_DWP96_Magnet, file1_SimOn, iSwap, ML_STAR.COREGripTool, Seegene_2Reagent50mLx6_1DWP_2PCR_R01_0001, Seegene_1HHS_1Magnet_1Tip_2Tube_R01_0001, HHS1);
              }
            }
            if (file4_Seq_Shaker_0 == 1796)
            {
              if (file1_SimOn == 0)
              {
                HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
                HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
              }
            }
          }
          if (STEP < 7)
          {
            if (Chk_Tip_Usage_1mL_zero != 0)
            {
              Copy_Tip_Sequence = file4_Tip_Sequence;
              file4_Tip_Sequence = 1;
              if (fileB_Thinprep == "true")
              {
                file4_Tip_Sequence = 2;
              }
              Check_reagent = 0;
              if (file1_SimOn == 0)
              {
                if (STEP < 4)
                {
                  if (STEP != 2)
                  {
                    if (Use_BLB == 0)
                    {
                      if (StepChk_Ctrdg_Flag > 0)
                      {
                        MECC::TraceComment(Translate("********************* Check the Catridge*********************"));
                        A_Kit_Flag = 0;
                        if (file2_Extraction_Kit == 10)
                        {
                        A_Kit_Flag = 1;
                        }
                        if (A_Kit_Flag == 1)
                        {
                        No_Ctrdge_Error_Flag = 0;
                        {
                        loopCounter70 = 0;
                        while (No_Ctrdge_Error_Flag == 0)
                        {
                        loopCounter70 = loopCounter70 + 1;
                        No_Tip_Error_Flag = 0;
                        {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_137 ;
                        err.Clear();
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        if (file1_SimOn == 0)
                        {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(ML_STAR, ChPatternAbort);
                        if (ChPatternAbort == "01100000")
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                        }
                        else
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        errLabel_137 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                        }
                        ML_STAR.Tub_3.SetCurrentPosition(2);
                        ML_STAR.Tub_3_2.SetCurrentPosition(2);
                        ML_STAR.Tub_4.SetCurrentPosition(2);
                        ML_STAR.Tub_4_2.SetCurrentPosition(2);
                        if (Sample_Cnt > STARMag_Remain)
                        {
                        onerror goto errLabel_138 ;
                        err.Clear();
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_Ctrdge_Error_Flag = 1;
                        if (StepChk_WB1_Flag == 1)
                        {
                        {
                        	variable arrRetValues[];
                        	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
                        	Ctrdge_height = arrRetValues[2];
                        }
                        Ctrdge_2nd_height = StepReturn::GetLastLiquidLevel(2, Ctrdge_height);
                        Trace ("Ctrdge_2nd_height = ", Ctrdge_2nd_height);
                        if (Ctrdge_2nd_height < 196)
                        {
                        dialogHandle_77.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Click OK to unload carrier and add the ethanol to the WB1 of 2nd cartridge."));
                        if( 0 == dialogHandle_77.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_77.ShowOutput(Translate("Add absolute ethanol to the WB1"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_77.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_66.SetOutput(Translate("Please put the cartridge in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_66.ShowOutput(Translate("Add absolute ethanol to the WB1"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        {
                        	variable arrRetValues[];
                        	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
                        	Ctrdge_height = arrRetValues[2];
                        }
                        Ctrdge_2nd_height = StepReturn::GetLastLiquidLevel(2, Ctrdge_height);
                        Trace ("Ctrdge_2nd_height = ", Ctrdge_2nd_height);
                        if (Ctrdge_2nd_height < 196)
                        {
                        dialogHandle_115.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_115.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_115.ShowOutput(Translate("Add absolute ethanol to the WB1"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_115.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        }
                        }
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_Ctrdge_Error_Flag = 1;
                        if (StepChk_WB2_Flag == 1)
                        {
                        {
                        	variable arrRetValues[];
                        	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
                        	Ctrdge_height = arrRetValues[2];
                        }
                        Ctrdge_2nd_height = StepReturn::GetLastLiquidLevel(3, Ctrdge_height);
                        Trace ("Ctrdge_2nd_height = ", Ctrdge_2nd_height);
                        if (Ctrdge_2nd_height < 171)
                        {
                        dialogHandle_67.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Click OK to unload carrier and add the ethanol to the WB2 of 2nd cartridge."));
                        if( 0 == dialogHandle_67.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_67.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_67.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_82.SetOutput(Translate("Please put the cartridge in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_82.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        {
                        	variable arrRetValues[];
                        	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
                        	Ctrdge_height = arrRetValues[2];
                        }
                        Ctrdge_2nd_height = StepReturn::GetLastLiquidLevel(3, Ctrdge_height);
                        Trace ("Ctrdge_2nd_height = ", Ctrdge_2nd_height);
                        if (Ctrdge_2nd_height < 171)
                        {
                        dialogHandle_110.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_110.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_110.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_110.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        }
                        }
                        errLabel_138 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_Ctrdge_Error_Flag = 0;
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (loopCounter70 == 2)
                        {
                        dialogHandle_112.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_112.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_112.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_112.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_52.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Click OK to unload the carrier and to place the cartridge in the correct position."));
                        if( 0 == dialogHandle_52.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_52.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_52.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_47.SetOutput(Translate("Please put the cartridge in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_47.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                        }   /* end if from skip handler if no error */
                        }
                        else
                        {
                        onerror goto errLabel_139 ;
                        err.Clear();
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_Ctrdge_Error_Flag = 1;
                        if (StepChk_WB1_Flag == 1)
                        {
                        {
                        	variable arrRetValues[];
                        	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
                        	Ctrdge_height = arrRetValues[2];
                        }
                        Ctrdge_height = StepReturn::GetLastLiquidLevel(2, Ctrdge_height);
                        Trace ("Ctrdge_height = ", Ctrdge_height);
                        if (STARMag_Remain == 96)
                        {
                        if (Ctrdge_height < 196)
                        {
                        dialogHandle_63.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Click OK to unload the carrier and add the ethanol to the WB1 cartridge."));
                        if( 0 == dialogHandle_63.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_63.ShowOutput(Translate("Add absolute ethanol to the WB1"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_63.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_48.SetOutput(Translate("Please put the cartridge in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_48.ShowOutput(Translate("Add absolute ethanol to the WB1"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        {
                        	variable arrRetValues[];
                        	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
                        	Ctrdge_height = arrRetValues[2];
                        }
                        Ctrdge_height = StepReturn::GetLastLiquidLevel(2, Ctrdge_height);
                        Trace ("Ctrdge_height = ", Ctrdge_height);
                        if (Ctrdge_height < 196)
                        {
                        dialogHandle_125.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_125.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_125.ShowOutput(Translate("Add absolute ethanol to the WB1"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_125.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        }
                        }
                        }
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_Ctrdge_Error_Flag = 1;
                        if (StepChk_WB2_Flag == 1)
                        {
                        {
                        	variable arrRetValues[];
                        	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
                        	Ctrdge_height = arrRetValues[2];
                        }
                        Ctrdge_height = StepReturn::GetLastLiquidLevel(3, Ctrdge_height);
                        Trace ("Ctrdge_height = ", Ctrdge_height);
                        if (STARMag_Remain == 96)
                        {
                        if (Ctrdge_height < 171)
                        {
                        dialogHandle_59.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Click OK to unload the carrier and add the ethanol to the WB2 cartridge."));
                        if( 0 == dialogHandle_59.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_59.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_59.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_80.SetOutput(Translate("Please put the cartridge in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_80.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        {
                        	variable arrRetValues[];
                        	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
                        	Ctrdge_height = arrRetValues[2];
                        }
                        Ctrdge_height = StepReturn::GetLastLiquidLevel(3, Ctrdge_height);
                        Trace ("Ctrdge_height = ", Ctrdge_height);
                        if (Ctrdge_height < 171)
                        {
                        dialogHandle_118.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_118.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_118.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_118.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        }
                        }
                        }
                        errLabel_139 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_Ctrdge_Error_Flag = 0;
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (loopCounter70 == 2)
                        {
                        dialogHandle_117.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_117.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_117.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_117.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_54.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Click OK to unload the carrier and to place the cartridge in the correct position."));
                        if( 0 == dialogHandle_54.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_54.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_54.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_79.SetOutput(Translate("Please put the cartridge in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_79.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                        }   /* end if from skip handler if no error */
                        }
                        }
                        }
                        No_Tip_Error_Flag = 0;
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        ML_STAR.Tub_3.SetCurrentPosition(1);
                        ML_STAR.Tub_3_2.SetCurrentPosition(1);
                        ML_STAR.Tub_4.SetCurrentPosition(1);
                        ML_STAR.Tub_4_2.SetCurrentPosition(1);
                        if (No_Ctrdge_Error_Flag == 1)
                        {
                        Checked_Ctrdge = Translate("Installed");
                        }
                        else
                        {
                        Checked_Ctrdge = Translate("Not Installed");
                        }
                        }
                        else
                        {
                        No_Ctrdge_Error_Flag = 0;
                        {
                        loopCounter70 = 0;
                        while (No_Ctrdge_Error_Flag == 0)
                        {
                        loopCounter70 = loopCounter70 + 1;
                        No_Tip_Error_Flag = 0;
                        {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_140 ;
                        err.Clear();
                        if (fileB_Thinprep == "true")
                        {
                        if (StepChk_Thinprep_AfterSample == 0)
                        {
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep);
                        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        }
                        else
                        {
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part);
                        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        }
                        }
                        else
                        {
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        }
                        if (file1_SimOn == 0)
                        {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(ML_STAR, ChPatternAbort);
                        if (ChPatternAbort == "01000000")
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                        }
                        else
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        if (fileB_Thinprep == "true")
                        {
                        if (StepChk_Thinprep_AfterSample == 0)
                        {
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep);
                        }
                        else
                        {
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part);
                        }
                        }
                        errLabel_140 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                        }
                        if (file2_Extraction_Kit >= 11)
                        {
                        ML_STAR.Tub_3.SetCurrentPosition(2);
                        ML_STAR.Tub_3_2.SetCurrentPosition(2);
                        }
                        else
                        {
                        ML_STAR.Tub_4.SetCurrentPosition(2);
                        ML_STAR.Tub_4_2.SetCurrentPosition(2);
                        }
                        if (Sample_Cnt > STARMag_Remain)
                        {
                        onerror goto errLabel_141 ;
                        err.Clear();
                        if (file2_Extraction_Kit >= 11)
                        {
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_Ctrdge_Error_Flag = 1;
                        if (StepChk_WB2_Flag == 1)
                        {
                        {
                        	variable arrRetValues[];
                        	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
                        	Ctrdge_height = arrRetValues[2];
                        }
                        Ctrdge_2nd_height = StepReturn::GetLastLiquidLevel(2, Ctrdge_height);
                        Trace ("Ctrdge_2nd_height = ", Ctrdge_2nd_height);
                        if (Ctrdge_2nd_height < 171)
                        {
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        dialogHandle_58.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Click OK to unload carrier and add the ethanol to the WB2 of 2nd cartridge."));
                        if( 0 == dialogHandle_58.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_58.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_58.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_83.SetOutput(Translate("Please put the cartridge in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_83.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        No_Ctrdge_Error_Flag = 0;
                        }
                        }
                        }
                        else
                        {
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_Ctrdge_Error_Flag = 1;
                        if (StepChk_WB2_Flag == 1)
                        {
                        {
                        	variable arrRetValues[];
                        	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
                        	Ctrdge_height = arrRetValues[2];
                        }
                        Ctrdge_2nd_height = StepReturn::GetLastLiquidLevel(2, Ctrdge_height);
                        Trace ("Ctrdge_2nd_height = ", Ctrdge_2nd_height);
                        if (Ctrdge_2nd_height < 171)
                        {
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        dialogHandle_71.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Click OK to unload carrier and add the ethanol to the WB2 of 2nd cartridge."));
                        if( 0 == dialogHandle_71.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_71.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_71.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_42.SetOutput(Translate("Please put the cartridge in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_42.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        No_Ctrdge_Error_Flag = 0;
                        }
                        }
                        }
                        errLabel_141 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_Ctrdge_Error_Flag = 0;
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (loopCounter70 == 2)
                        {
                        dialogHandle_124.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_124.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_124.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_124.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_46.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Click OK to unload the carrier and to place the cartridge in the correct position."));
                        if( 0 == dialogHandle_46.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_46.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_46.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_75.SetOutput(Translate("Please put the cartridge in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_75.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                        }   /* end if from skip handler if no error */
                        }
                        else
                        {
                        onerror goto errLabel_142 ;
                        err.Clear();
                        if (file2_Extraction_Kit >= 11)
                        {
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_Ctrdge_Error_Flag = 1;
                        if (StepChk_WB2_Flag == 1)
                        {
                        {
                        	variable arrRetValues[];
                        	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
                        	Ctrdge_height = arrRetValues[2];
                        }
                        Ctrdge_height = StepReturn::GetLastLiquidLevel(2, Ctrdge_height);
                        Trace ("Ctrdge_height = ", Ctrdge_height);
                        if (STARMag_Remain == 96)
                        {
                        if (Ctrdge_height < 171)
                        {
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        dialogHandle_45.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Click OK to unload the carrier and add the ethanol to the WB2 cartridge."));
                        if( 0 == dialogHandle_45.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_45.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_45.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_39.SetOutput(Translate("Please put the cartridge in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_39.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        No_Ctrdge_Error_Flag = 0;
                        }
                        }
                        }
                        }
                        else
                        {
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_Ctrdge_Error_Flag = 1;
                        if (StepChk_WB2_Flag == 1)
                        {
                        {
                        	variable arrRetValues[];
                        	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
                        	Ctrdge_height = arrRetValues[2];
                        }
                        Ctrdge_height = StepReturn::GetLastLiquidLevel(2, Ctrdge_height);
                        Trace ("Ctrdge_height = ", Ctrdge_height);
                        if (STARMag_Remain == 96)
                        {
                        if (Ctrdge_height < 171)
                        {
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        dialogHandle_44.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Click OK to unload the carrier and add the ethanol to the WB2 cartridge."));
                        if( 0 == dialogHandle_44.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_44.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_44.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_72.SetOutput(Translate("Please put the cartridge in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_72.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        No_Ctrdge_Error_Flag = 0;
                        }
                        }
                        }
                        }
                        errLabel_142 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_Ctrdge_Error_Flag = 0;
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (loopCounter70 == 2)
                        {
                        dialogHandle_107.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_107.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_107.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_107.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_50.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Click OK to unload the carrier and to place the cartridge in the correct position."));
                        if( 0 == dialogHandle_50.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_50.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_50.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_60.SetOutput(Translate("Please put the cartridge in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_60.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                        }   /* end if from skip handler if no error */
                        }
                        }
                        }
                        No_Tip_Error_Flag = 0;
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (file2_Extraction_Kit >= 11)
                        {
                        ML_STAR.Tub_3.SetCurrentPosition(1);
                        ML_STAR.Tub_3_2.SetCurrentPosition(1);
                        }
                        else
                        {
                        ML_STAR.Tub_4.SetCurrentPosition(1);
                        ML_STAR.Tub_4_2.SetCurrentPosition(1);
                        }
                        if (No_Ctrdge_Error_Flag == 1)
                        {
                        Checked_Ctrdge = Translate("Installed");
                        }
                        else
                        {
                        Checked_Ctrdge = Translate("Not Installed");
                        }
                        }
                      }
                    }
                    else
                    {
                      if (StepChk_Ctrdg_Flag > 0)
                      {
                        MECC::TraceComment(Translate("********************* Check the Catridge*********************"));
                        No_Ctrdge_Error_Flag = 0;
                        {
                        loopCounter70 = 0;
                        while (No_Ctrdge_Error_Flag == 0)
                        {
                        loopCounter70 = loopCounter70 + 1;
                        No_Tip_Error_Flag = 0;
                        {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_143 ;
                        err.Clear();
                        if (fileB_Thinprep == "true")
                        {
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep);
                        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        }
                        else
                        {
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        }
                        if (file1_SimOn == 0)
                        {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(ML_STAR, ChPatternAbort);
                        if (ChPatternAbort == "01000000")
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                        }
                        else
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        if (fileB_Thinprep == "true")
                        {
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep);
                        }
                        errLabel_143 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                        }
                        ML_STAR.Tub_1.SetCurrentPosition(2);
                        ML_STAR.Tub_1_2.SetCurrentPosition(2);
                        if (Sample_Cnt > STARMag_Remain)
                        {
                        onerror goto errLabel_144 ;
                        err.Clear();
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_Ctrdge_Error_Flag = 1;
                        errLabel_144 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (loopCounter70 == 2)
                        {
                        dialogHandle_114.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_114.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_114.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_114.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_41.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Click OK to unload the carrier and to place the cartridge in the correct position."));
                        if( 0 == dialogHandle_41.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_41.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_41.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_40.SetOutput(Translate("Please put the cartridge in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_40.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        }   /* end if from skip handler if no error */
                        }
                        else
                        {
                        onerror goto errLabel_145 ;
                        err.Clear();
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_Ctrdge_Error_Flag = 1;
                        errLabel_145 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (loopCounter70 == 2)
                        {
                        dialogHandle_121.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_121.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_121.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_121.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_57.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Click OK to unload the carrier and to place the cartridge in the correct position."));
                        if( 0 == dialogHandle_57.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_57.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_57.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_65.SetOutput(Translate("Please put the cartridge in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_65.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        }   /* end if from skip handler if no error */
                        }
                        }
                        }
                        No_Tip_Error_Flag = 0;
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        ML_STAR.Tub_1.SetCurrentPosition(1);
                        ML_STAR.Tub_1_2.SetCurrentPosition(1);
                        if (No_Ctrdge_Error_Flag == 1)
                        {
                        Checked_Ctrdge = Translate("Installed");
                        }
                        else
                        {
                        Checked_Ctrdge = Translate("Not Installed");
                        }
                      }
                    }
                    if (fileB_Thinprep != "true")
                    {
                      if (file2_Extraction_Kit == 11)
                      {
                      }
                      else
                      {
                        if (StepChk_PKBead_Flag > 0)
                        {
                        MECC::TraceComment(Translate("********************* Check the PK and Beads*********************"));
                        if (file2_Product_No == "PRODUCT_EXT_016")
                        {
                        No_PK_Error_Flag = 0;
                        {
                        loopCounter70 = 0;
                        while (No_PK_Error_Flag == 0)
                        {
                        loopCounter70 = loopCounter70 + 1;
                        ChPattern_Chk_PKBeads = Translate("01000000");
                        No_Tip_Error_Flag = 0;
                        {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_146 ;
                        err.Clear();
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        if (file1_SimOn == 0)
                        {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(ML_STAR, ChPatternAbort);
                        if (ChPatternAbort == ChPattern_Chk_PKBeads)
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                        }
                        else
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        errLabel_146 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                        }
                        onerror goto errLabel_147 ;
                        err.Clear();
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_PK_Error_Flag = 1;
                        errLabel_147 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        dialogHandle_85.SetOutput(Translate("The PK tube is not installed."), "\n", Translate("Click OK to unload the carrier and to place the tube in the correct position."));
                        if( 0 == dialogHandle_85.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_85.ShowOutput(Translate("PK Tube Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_85.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_74.SetOutput(Translate("Please put the tube in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_74.ShowOutput(Translate("PK Tube Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        }   /* end if from skip handler if no error */
                        }
                        }
                        No_Tip_Error_Flag = 0;
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (No_PK_Error_Flag == 1)
                        {
                        Checked_PK = Translate("Installed");
                        }
                        else
                        {
                        Checked_PK = Translate("Not Installed");
                        }
                        }
                        else
                        {
                        if (file2_Product_No == "PRODUCT_EXT_019")
                        {
                        No_PK_Error_Flag = 0;
                        {
                        loopCounter70 = 0;
                        while (No_PK_Error_Flag == 0)
                        {
                        loopCounter70 = loopCounter70 + 1;
                        ChPattern_Chk_PKBeads = Translate("01000000");
                        No_Tip_Error_Flag = 0;
                        {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_148 ;
                        err.Clear();
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        if (file1_SimOn == 0)
                        {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(ML_STAR, ChPatternAbort);
                        if (ChPatternAbort == ChPattern_Chk_PKBeads)
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                        }
                        else
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        errLabel_148 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                        }
                        onerror goto errLabel_149 ;
                        err.Clear();
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_PK_Error_Flag = 1;
                        errLabel_149 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        dialogHandle_95.SetOutput(Translate("The PK tube is not installed."), "\n", Translate("Click OK to unload the carrier and to place the tube in the correct position."));
                        if( 0 == dialogHandle_95.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_95.ShowOutput(Translate("PK Tube Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_95.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_98.SetOutput(Translate("Please put the tube in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_98.ShowOutput(Translate("PK Tube Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        }   /* end if from skip handler if no error */
                        }
                        }
                        No_Tip_Error_Flag = 0;
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (No_PK_Error_Flag == 1)
                        {
                        Checked_PK = Translate("Installed");
                        }
                        else
                        {
                        Checked_PK = Translate("Not Installed");
                        }
                        }
                        else
                        {
                        No_PK_Error_Flag = 0;
                        {
                        loopCounter70 = 0;
                        while (No_PK_Error_Flag == 0)
                        {
                        loopCounter70 = loopCounter70 + 1;
                        if (StepChk_PKBead_Flag > 1)
                        {
                        if (file2_Extraction_Kit == 12)
                        {
                        if (Sample_Cnt > STARMag_Remain)
                        {
                        ChPattern_Chk_PKBeads = Translate("11110000");
                        }
                        else
                        {
                        ChPattern_Chk_PKBeads = Translate("10100000");
                        }
                        }
                        else
                        {
                        if (Sample_Cnt > STARMag_Remain)
                        {
                        ChPattern_Chk_PKBeads = Translate("11100000");
                        }
                        else
                        {
                        ChPattern_Chk_PKBeads = Translate("11000000");
                        }
                        }
                        }
                        else
                        {
                        if (file2_Extraction_Kit == 12)
                        {
                        if (Sample_Cnt > STARMag_Remain)
                        {
                        ChPattern_Chk_PKBeads = Translate("00110000");
                        }
                        else
                        {
                        ChPattern_Chk_PKBeads = Translate("00100000");
                        }
                        ML_STAR.Check_PK_Bead.SetCurrentPosition(3);
                        }
                        else
                        {
                        if (Sample_Cnt > STARMag_Remain)
                        {
                        ChPattern_Chk_PKBeads = Translate("01100000");
                        }
                        else
                        {
                        ChPattern_Chk_PKBeads = Translate("01000000");
                        }
                        ML_STAR.Check_PK_Bead.SetCurrentPosition(2);
                        }
                        }
                        No_Tip_Error_Flag = 0;
                        {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_150 ;
                        err.Clear();
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        if (file1_SimOn == 0)
                        {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(ML_STAR, ChPatternAbort);
                        if (ChPatternAbort == ChPattern_Chk_PKBeads)
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                        }
                        else
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        errLabel_150 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                        }
                        onerror goto errLabel_151 ;
                        err.Clear();
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_PK_Error_Flag = 1;
                        errLabel_151 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        dialogHandle_97.SetOutput(Translate("The PK or Beads tube is not installed."), "\n", Translate("Click OK to unload the carrier and to place the tube in the correct position."));
                        if( 0 == dialogHandle_97.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_97.ShowOutput(Translate("PK or Beads Tube Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_97.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_94.SetOutput(Translate("Please put the tube in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_94.ShowOutput(Translate("PK or Beads Tube Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        }   /* end if from skip handler if no error */
                        }
                        }
                        No_Tip_Error_Flag = 0;
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (No_PK_Error_Flag == 1)
                        {
                        Checked_PK = Translate("Installed");
                        }
                        else
                        {
                        Checked_PK = Translate("Not Installed");
                        }
                        }
                        }
                        }
                      }
                      if (StepChk_IC_Flag > 0)
                      {
                        MECC::TraceComment(Translate("********************* Check the IC*********************"));
                        Checked_IC = Translate("Not Proceed.");
                        Use_IC1 = 0;
                        Use_IC2 = 0;
                        Use_IC3 = 0;
                        Use_IC4 = 0;
                        Use_IC5 = 0;
                        Use_IC6 = 0;
                        fileD.AddField("IC1", fileD_IC1, hslString, 255);
                        fileD.AddField("IC2", fileD_IC2, hslString, 255);
                        fileD.AddField("IC3", fileD_IC3, hslString, 255);
                        fileD.AddField("IC4", fileD_IC4, hslString, 255);
                        fileD.AddField("IC5", fileD_IC5, hslString, 255);
                        fileD.AddField("IC6", fileD_IC6, hslString, 255);
                        if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList2$", hslRead) )
                        {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
                        }
                        {
                        loopCounter14 = 0;
                        while (
                           (fileD.Eof() == 0)
                        )
                        {
                        loopCounter14 = loopCounter14 + 1;
                        if( 0 == fileD.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (fileD_IC1 == "true")
                        {
                        Use_IC1 = 1;
                        if( 0 != fileD.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        fileD.RemoveFields();
                        break;
                        }
                        }
                        }
                        fileD.AddField("IC1", fileD_IC1, hslString, 255);
                        fileD.AddField("IC2", fileD_IC2, hslString, 255);
                        fileD.AddField("IC3", fileD_IC3, hslString, 255);
                        fileD.AddField("IC4", fileD_IC4, hslString, 255);
                        fileD.AddField("IC5", fileD_IC5, hslString, 255);
                        fileD.AddField("IC6", fileD_IC6, hslString, 255);
                        if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList2$", hslRead) )
                        {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
                        }
                        {
                        loopCounter14 = 0;
                        while (
                           (fileD.Eof() == 0)
                        )
                        {
                        loopCounter14 = loopCounter14 + 1;
                        if( 0 == fileD.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (fileD_IC2 == "true")
                        {
                        Use_IC2 = 1;
                        if( 0 != fileD.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        fileD.RemoveFields();
                        break;
                        }
                        }
                        }
                        fileD.AddField("IC1", fileD_IC1, hslString, 255);
                        fileD.AddField("IC2", fileD_IC2, hslString, 255);
                        fileD.AddField("IC3", fileD_IC3, hslString, 255);
                        fileD.AddField("IC4", fileD_IC4, hslString, 255);
                        fileD.AddField("IC5", fileD_IC5, hslString, 255);
                        fileD.AddField("IC6", fileD_IC6, hslString, 255);
                        if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList2$", hslRead) )
                        {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
                        }
                        {
                        loopCounter14 = 0;
                        while (
                           (fileD.Eof() == 0)
                        )
                        {
                        loopCounter14 = loopCounter14 + 1;
                        if( 0 == fileD.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (fileD_IC3 == "true")
                        {
                        Use_IC3 = 1;
                        if( 0 != fileD.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        fileD.RemoveFields();
                        break;
                        }
                        }
                        }
                        fileD.AddField("IC1", fileD_IC1, hslString, 255);
                        fileD.AddField("IC2", fileD_IC2, hslString, 255);
                        fileD.AddField("IC3", fileD_IC3, hslString, 255);
                        fileD.AddField("IC4", fileD_IC4, hslString, 255);
                        fileD.AddField("IC5", fileD_IC5, hslString, 255);
                        fileD.AddField("IC6", fileD_IC6, hslString, 255);
                        if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList2$", hslRead) )
                        {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
                        }
                        {
                        loopCounter14 = 0;
                        while (
                           (fileD.Eof() == 0)
                        )
                        {
                        loopCounter14 = loopCounter14 + 1;
                        if( 0 == fileD.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (fileD_IC4 == "true")
                        {
                        Use_IC4 = 1;
                        if( 0 != fileD.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        fileD.RemoveFields();
                        break;
                        }
                        }
                        }
                        fileD.AddField("IC1", fileD_IC1, hslString, 255);
                        fileD.AddField("IC2", fileD_IC2, hslString, 255);
                        fileD.AddField("IC3", fileD_IC3, hslString, 255);
                        fileD.AddField("IC4", fileD_IC4, hslString, 255);
                        fileD.AddField("IC5", fileD_IC5, hslString, 255);
                        fileD.AddField("IC6", fileD_IC6, hslString, 255);
                        if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList2$", hslRead) )
                        {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
                        }
                        {
                        loopCounter14 = 0;
                        while (
                           (fileD.Eof() == 0)
                        )
                        {
                        loopCounter14 = loopCounter14 + 1;
                        if( 0 == fileD.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (fileD_IC5 == "true")
                        {
                        Use_IC5 = 1;
                        if( 0 != fileD.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        fileD.RemoveFields();
                        break;
                        }
                        }
                        }
                        fileD.AddField("IC1", fileD_IC1, hslString, 255);
                        fileD.AddField("IC2", fileD_IC2, hslString, 255);
                        fileD.AddField("IC3", fileD_IC3, hslString, 255);
                        fileD.AddField("IC4", fileD_IC4, hslString, 255);
                        fileD.AddField("IC5", fileD_IC5, hslString, 255);
                        fileD.AddField("IC6", fileD_IC6, hslString, 255);
                        if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList2$", hslRead) )
                        {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
                        }
                        {
                        loopCounter14 = 0;
                        while (
                           (fileD.Eof() == 0)
                        )
                        {
                        loopCounter14 = loopCounter14 + 1;
                        if( 0 == fileD.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (fileD_IC6 == "true")
                        {
                        Use_IC6 = 1;
                        if( 0 != fileD.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        fileD.RemoveFields();
                        break;
                        }
                        }
                        }
                        if( 0 != fileD.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        fileD.RemoveFields();
                        ChPattern_Chk_IC = StrConcat8(Use_IC1, Use_IC2, Use_IC3, Use_IC4, Use_IC5, Use_IC6, 0, 0);
                        if (Use_IC6 == 1)
                        {
                        Used_IC_No = 6;
                        }
                        else
                        {
                        if (Use_IC5 == 1)
                        {
                        Used_IC_No = 5;
                        }
                        else
                        {
                        if (Use_IC4 == 1)
                        {
                        Used_IC_No = 4;
                        }
                        else
                        {
                        if (Use_IC3 == 1)
                        {
                        Used_IC_No = 3;
                        }
                        else
                        {
                        if (Use_IC2 == 1)
                        {
                        Used_IC_No = 2;
                        }
                        else
                        {
                        if (Use_IC1 == 1)
                        {
                        Used_IC_No = 1;
                        }
                        else
                        {
                        Used_IC_No = 0;
                        }
                        }
                        }
                        }
                        }
                        }
                        if (Used_IC_No > 0)
                        {
                        No_IC_Error_Flag = 0;
                        No_Tip_Error_Flag = 0;
                        {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_152 ;
                        err.Clear();
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        if (file1_SimOn == 0)
                        {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(ML_STAR, ChPatternAbort);
                        if (ChPatternAbort == ChPattern_Chk_IC)
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                        }
                        else
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        errLabel_152 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                        }
                        {
                        loopCounter70 = 0;
                        while (No_IC_Error_Flag == 0)
                        {
                        loopCounter70 = loopCounter70 + 1;
                        onerror goto errLabel_153 ;
                        err.Clear();
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_IC_Error_Flag = 1;
                        errLabel_153 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        dialogHandle_69.SetOutput(Translate("The IC tube(s) are not installed."), "\n", Translate("Click OK to unload the carrier and to place the tube in the correct position."));
                        if( 0 == dialogHandle_69.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_69.ShowOutput(Translate("IC tube Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_69.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_51.SetOutput(Translate("Please put the IC tube in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_51.ShowOutput(Translate("IC tube Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        }   /* end if from skip handler if no error */
                        }
                        }
                        No_Tip_Error_Flag = 0;
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (No_IC_Error_Flag == 1)
                        {
                        Checked_IC = Translate("Installed");
                        }
                        else
                        {
                        Checked_IC = Translate("Not Installed");
                        }
                        }
                      }
                      MECC::TraceComment(Translate("********************* Check whether the extraction is installed*********************"));
                      Trace ("Catridge = ", Checked_Ctrdge);
                      Trace ("PK and Beads = ", Checked_PK);
                      Trace ("IC = ", Checked_IC);
                    }
                  }
                }
                if (STEP == 6)
                {
                  if (Use_BLB == 0)
                  {
                    if (StepChk_Ctrdg_Flag > 0)
                    {
                      MECC::TraceComment(Translate("********************* Check the Catridge*********************"));
                      No_Ctrdge_Error_Flag = 0;
                      {
                        loopCounter70 = 0;
                        while (No_Ctrdge_Error_Flag == 0)
                        {
                        loopCounter70 = loopCounter70 + 1;
                        No_Tip_Error_Flag = 0;
                        {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_154 ;
                        err.Clear();
                        if (fileB_Thinprep == "true")
                        {
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep);
                        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        }
                        else
                        {
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        }
                        if (file1_SimOn == 0)
                        {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(ML_STAR, ChPatternAbort);
                        if (ChPatternAbort == "01000000")
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                        }
                        else
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        if (fileB_Thinprep == "true")
                        {
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep);
                        }
                        errLabel_154 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                        }
                        ML_STAR.Tub_4.SetCurrentPosition(2);
                        ML_STAR.Tub_4_2.SetCurrentPosition(2);
                        if (Sample_Cnt > STARMag_Remain)
                        {
                        onerror goto errLabel_155 ;
                        err.Clear();
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_Ctrdge_Error_Flag = 1;
                        if (StepChk_WB2_Flag == 1)
                        {
                        {
                        	variable arrRetValues[];
                        	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
                        	Ctrdge_height = arrRetValues[2];
                        }
                        Ctrdge_2nd_height = StepReturn::GetLastLiquidLevel(2, Ctrdge_height);
                        Trace ("Ctrdge_2nd_height = ", Ctrdge_2nd_height);
                        if (Ctrdge_2nd_height < 171)
                        {
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        dialogHandle_68.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Click OK to unload carrier and add the ethanol to the WB2 of 2nd cartridge."));
                        if( 0 == dialogHandle_68.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_68.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_68.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_49.SetOutput(Translate("Please put the cartridge in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_49.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        No_Ctrdge_Error_Flag = 0;
                        }
                        }
                        errLabel_155 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_Ctrdge_Error_Flag = 0;
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (loopCounter70 == 2)
                        {
                        dialogHandle_108.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_108.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_108.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_108.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_62.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Click OK to unload the carrier and to place the cartridge in the correct position."));
                        if( 0 == dialogHandle_62.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_62.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_62.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_55.SetOutput(Translate("Please put the cartridge in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_55.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                        }   /* end if from skip handler if no error */
                        }
                        else
                        {
                        onerror goto errLabel_156 ;
                        err.Clear();
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_Ctrdge_Error_Flag = 1;
                        if (StepChk_WB2_Flag == 1)
                        {
                        {
                        	variable arrRetValues[];
                        	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
                        	Ctrdge_height = arrRetValues[2];
                        }
                        Ctrdge_height = StepReturn::GetLastLiquidLevel(2, Ctrdge_height);
                        Trace ("Ctrdge_height = ", Ctrdge_height);
                        if (STARMag_Remain == 96)
                        {
                        if (Ctrdge_height < 171)
                        {
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        dialogHandle_61.SetOutput(Translate("When using the cartridge for the first time,"), "\n", Translate("absolute ethanol should be added."), "\n", Translate("Click OK to unload the carrier and add the ethanol to the WB2 cartridge."));
                        if( 0 == dialogHandle_61.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_61.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_61.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_78.SetOutput(Translate("Please put the cartridge in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_78.ShowOutput(Translate("Add absolute ethanol to the WB2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        No_Ctrdge_Error_Flag = 0;
                        }
                        }
                        }
                        errLabel_156 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        No_Ctrdge_Error_Flag = 0;
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (loopCounter70 == 2)
                        {
                        dialogHandle_113.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_113.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_113.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_113.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_76.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Click OK to unload the carrier and to place the cartridge in the correct position."));
                        if( 0 == dialogHandle_76.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_76.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_76.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_73.SetOutput(Translate("Please put the cartridge in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_73.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                        }   /* end if from skip handler if no error */
                        }
                        }
                      }
                      No_Tip_Error_Flag = 0;
                      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                      ML_STAR.Tub_4.SetCurrentPosition(1);
                      ML_STAR.Tub_4_2.SetCurrentPosition(1);
                      if (No_Ctrdge_Error_Flag == 1)
                      {
                        Checked_Ctrdge = Translate("Installed");
                      }
                      else
                      {
                        Checked_Ctrdge = Translate("Not Installed");
                      }
                    }
                  }
                  else
                  {
                    if (StepChk_Ctrdg_Flag > 0)
                    {
                      MECC::TraceComment(Translate("********************* Check the Catridge*********************"));
                      No_Ctrdge_Error_Flag = 0;
                      {
                        loopCounter70 = 0;
                        while (No_Ctrdge_Error_Flag == 0)
                        {
                        loopCounter70 = loopCounter70 + 1;
                        No_Tip_Error_Flag = 0;
                        {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_157 ;
                        err.Clear();
                        if (fileB_Thinprep == "true")
                        {
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep);
                        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        }
                        else
                        {
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        }
                        if (file1_SimOn == 0)
                        {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(ML_STAR, ChPatternAbort);
                        if (ChPatternAbort == "01000000")
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                        }
                        else
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        if (fileB_Thinprep == "true")
                        {
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep);
                        }
                        errLabel_157 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                        }
                        ML_STAR.Tub_4.SetCurrentPosition(2);
                        ML_STAR.Tub_4_2.SetCurrentPosition(2);
                        if (Sample_Cnt > STARMag_Remain)
                        {
                        onerror goto errLabel_158 ;
                        err.Clear();
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_Ctrdge_Error_Flag = 1;
                        errLabel_158 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (loopCounter70 == 2)
                        {
                        dialogHandle_111.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_111.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_111.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_111.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_86.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Click OK to unload the carrier and to place the cartridge in the correct position."));
                        if( 0 == dialogHandle_86.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_86.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_86.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_70.SetOutput(Translate("Please put the cartridge in the correct position."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_70.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        }   /* end if from skip handler if no error */
                        }
                        else
                        {
                        onerror goto errLabel_159 ;
                        err.Clear();
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_Ctrdge_Error_Flag = 1;
                        errLabel_159 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (loopCounter70 == 2)
                        {
                        dialogHandle_105.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Place the cartridge in the correct position and Run again."));
                        if( 0 == dialogHandle_105.PlaySound("C:\\Windows\\Media\\Windows Critical Stop.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_105.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_105.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        abort;
                        }
                        dialogHandle_84.SetOutput(Translate("The extraction cartridge is not installed."), "\n", Translate("Click OK to unload the carrier and to place the cartridge in the correct position."));
                        if( 0 == dialogHandle_84.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_84.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_84.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_81.SetOutput(Translate("Please put the cartridge in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_81.ShowOutput(Translate("Cartridge Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        }   /* end if from skip handler if no error */
                        }
                        }
                      }
                      No_Tip_Error_Flag = 0;
                      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                      ML_STAR.Tub_1.SetCurrentPosition(1);
                      ML_STAR.Tub_1_2.SetCurrentPosition(1);
                      if (No_Ctrdge_Error_Flag == 1)
                      {
                        Checked_Ctrdge = Translate("Installed");
                      }
                      else
                      {
                        Checked_Ctrdge = Translate("Not Installed");
                      }
                    }
                  }
                  if (fileB_Thinprep != "true")
                  {
                    if (StepChk_PKBead_Flag > 0)
                    {
                      MECC::TraceComment(Translate("********************* Check the PK and Beads*********************"));
                      No_PK_Error_Flag = 0;
                      {
                        loopCounter70 = 0;
                        while (No_PK_Error_Flag == 0)
                        {
                        loopCounter70 = loopCounter70 + 1;
                        if (StepChk_PKBead_Flag > 1)
                        {
                        if (Sample_Cnt > STARMag_Remain)
                        {
                        ChPattern_Chk_PKBeads = Translate("11100000");
                        }
                        else
                        {
                        ChPattern_Chk_PKBeads = Translate("11000000");
                        }
                        }
                        else
                        {
                        if (Sample_Cnt > STARMag_Remain)
                        {
                        ChPattern_Chk_PKBeads = Translate("01100000");
                        }
                        else
                        {
                        ChPattern_Chk_PKBeads = Translate("01000000");
                        }
                        ML_STAR.Check_PK_Bead.SetCurrentPosition(2);
                        }
                        No_Tip_Error_Flag = 0;
                        {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_160 ;
                        err.Clear();
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        if (file1_SimOn == 0)
                        {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(ML_STAR, ChPatternAbort);
                        if (ChPatternAbort == ChPattern_Chk_PKBeads)
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                        }
                        else
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        errLabel_160 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                        }
                        onerror goto errLabel_161 ;
                        err.Clear();
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_PK_Error_Flag = 1;
                        errLabel_161 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        dialogHandle_64.SetOutput(Translate("The PK or Beads tube is not installed."), "\n", Translate("Click OK to unload the carrier and to place the tube in the correct position."));
                        if( 0 == dialogHandle_64.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_64.ShowOutput(Translate("PK or Beads Tube Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_64.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_53.SetOutput(Translate("Please put the tube in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_53.ShowOutput(Translate("PK or Beads Tube Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        }   /* end if from skip handler if no error */
                        }
                      }
                      No_Tip_Error_Flag = 0;
                      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                      if (No_PK_Error_Flag == 1)
                      {
                        Checked_PK = Translate("Installed");
                      }
                      else
                      {
                        Checked_PK = Translate("Not Installed");
                      }
                    }
                    if (StepChk_IC_Flag > 0)
                    {
                      MECC::TraceComment(Translate("********************* Check the IC*********************"));
                      Checked_IC = Translate("Not Proceed.");
                      Use_IC1 = 0;
                      Use_IC2 = 0;
                      Use_IC3 = 0;
                      Use_IC4 = 0;
                      Use_IC5 = 0;
                      Use_IC6 = 0;
                      fileD.AddField("IC1", fileD_IC1, hslString, 255);
                      fileD.AddField("IC2", fileD_IC2, hslString, 255);
                      fileD.AddField("IC3", fileD_IC3, hslString, 255);
                      fileD.AddField("IC4", fileD_IC4, hslString, 255);
                      fileD.AddField("IC5", fileD_IC5, hslString, 255);
                      fileD.AddField("IC6", fileD_IC6, hslString, 255);
                      if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList2$", hslRead) )
                      {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
                      }
                      {
                        loopCounter14 = 0;
                        while (
                           (fileD.Eof() == 0)
                        )
                        {
                        loopCounter14 = loopCounter14 + 1;
                        if( 0 == fileD.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (fileD_IC1 == "true")
                        {
                        Use_IC1 = 1;
                        if( 0 != fileD.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        fileD.RemoveFields();
                        break;
                        }
                        }
                      }
                      fileD.AddField("IC1", fileD_IC1, hslString, 255);
                      fileD.AddField("IC2", fileD_IC2, hslString, 255);
                      fileD.AddField("IC3", fileD_IC3, hslString, 255);
                      fileD.AddField("IC4", fileD_IC4, hslString, 255);
                      fileD.AddField("IC5", fileD_IC5, hslString, 255);
                      fileD.AddField("IC6", fileD_IC6, hslString, 255);
                      if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList2$", hslRead) )
                      {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
                      }
                      {
                        loopCounter14 = 0;
                        while (
                           (fileD.Eof() == 0)
                        )
                        {
                        loopCounter14 = loopCounter14 + 1;
                        if( 0 == fileD.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (fileD_IC2 == "true")
                        {
                        Use_IC2 = 1;
                        if( 0 != fileD.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        fileD.RemoveFields();
                        break;
                        }
                        }
                      }
                      fileD.AddField("IC1", fileD_IC1, hslString, 255);
                      fileD.AddField("IC2", fileD_IC2, hslString, 255);
                      fileD.AddField("IC3", fileD_IC3, hslString, 255);
                      fileD.AddField("IC4", fileD_IC4, hslString, 255);
                      fileD.AddField("IC5", fileD_IC5, hslString, 255);
                      fileD.AddField("IC6", fileD_IC6, hslString, 255);
                      if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList2$", hslRead) )
                      {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
                      }
                      {
                        loopCounter14 = 0;
                        while (
                           (fileD.Eof() == 0)
                        )
                        {
                        loopCounter14 = loopCounter14 + 1;
                        if( 0 == fileD.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (fileD_IC3 == "true")
                        {
                        Use_IC3 = 1;
                        if( 0 != fileD.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        fileD.RemoveFields();
                        break;
                        }
                        }
                      }
                      fileD.AddField("IC1", fileD_IC1, hslString, 255);
                      fileD.AddField("IC2", fileD_IC2, hslString, 255);
                      fileD.AddField("IC3", fileD_IC3, hslString, 255);
                      fileD.AddField("IC4", fileD_IC4, hslString, 255);
                      fileD.AddField("IC5", fileD_IC5, hslString, 255);
                      fileD.AddField("IC6", fileD_IC6, hslString, 255);
                      if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList2$", hslRead) )
                      {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
                      }
                      {
                        loopCounter14 = 0;
                        while (
                           (fileD.Eof() == 0)
                        )
                        {
                        loopCounter14 = loopCounter14 + 1;
                        if( 0 == fileD.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (fileD_IC4 == "true")
                        {
                        Use_IC4 = 1;
                        if( 0 != fileD.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        fileD.RemoveFields();
                        break;
                        }
                        }
                      }
                      fileD.AddField("IC1", fileD_IC1, hslString, 255);
                      fileD.AddField("IC2", fileD_IC2, hslString, 255);
                      fileD.AddField("IC3", fileD_IC3, hslString, 255);
                      fileD.AddField("IC4", fileD_IC4, hslString, 255);
                      fileD.AddField("IC5", fileD_IC5, hslString, 255);
                      fileD.AddField("IC6", fileD_IC6, hslString, 255);
                      if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList2$", hslRead) )
                      {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
                      }
                      {
                        loopCounter14 = 0;
                        while (
                           (fileD.Eof() == 0)
                        )
                        {
                        loopCounter14 = loopCounter14 + 1;
                        if( 0 == fileD.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (fileD_IC5 == "true")
                        {
                        Use_IC5 = 1;
                        if( 0 != fileD.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        fileD.RemoveFields();
                        break;
                        }
                        }
                      }
                      fileD.AddField("IC1", fileD_IC1, hslString, 255);
                      fileD.AddField("IC2", fileD_IC2, hslString, 255);
                      fileD.AddField("IC3", fileD_IC3, hslString, 255);
                      fileD.AddField("IC4", fileD_IC4, hslString, 255);
                      fileD.AddField("IC5", fileD_IC5, hslString, 255);
                      fileD.AddField("IC6", fileD_IC6, hslString, 255);
                      if( 0 == fileD.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList2$", hslRead) )
                      {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
                      }
                      {
                        loopCounter14 = 0;
                        while (
                           (fileD.Eof() == 0)
                        )
                        {
                        loopCounter14 = loopCounter14 + 1;
                        if( 0 == fileD.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (fileD_IC6 == "true")
                        {
                        Use_IC6 = 1;
                        if( 0 != fileD.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        fileD.RemoveFields();
                        break;
                        }
                        }
                      }
                      if( 0 != fileD.Close() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      fileD.RemoveFields();
                      ChPattern_Chk_IC = StrConcat8(Use_IC1, Use_IC2, Use_IC3, Use_IC4, Use_IC5, Use_IC6, 0, 0);
                      if (Use_IC6 == 1)
                      {
                        Used_IC_No = 6;
                      }
                      else
                      {
                        if (Use_IC5 == 1)
                        {
                        Used_IC_No = 5;
                        }
                        else
                        {
                        if (Use_IC4 == 1)
                        {
                        Used_IC_No = 4;
                        }
                        else
                        {
                        if (Use_IC3 == 1)
                        {
                        Used_IC_No = 3;
                        }
                        else
                        {
                        if (Use_IC2 == 1)
                        {
                        Used_IC_No = 2;
                        }
                        else
                        {
                        if (Use_IC1 == 1)
                        {
                        Used_IC_No = 1;
                        }
                        else
                        {
                        Used_IC_No = 0;
                        }
                        }
                        }
                        }
                        }
                      }
                      if (Used_IC_No > 0)
                      {
                        No_IC_Error_Flag = 0;
                        No_Tip_Error_Flag = 0;
                        {
                        loopCounter55 = 0;
                        while (No_Tip_Error_Flag == 0)
                        {
                        loopCounter55 = loopCounter55 + 1;
                        onerror goto errLabel_162 ;
                        err.Clear();
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                        if (file1_SimOn == 0)
                        {
                        TipsStillOn = TIP_PRESENT_CHECK::Check_Tips_Present(ML_STAR, ChPatternAbort);
                        if (ChPatternAbort == ChPattern_Chk_IC)
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        else
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }
                        }
                        else
                        {
                        No_Tip_Error_Flag = 1;
                        }
                        SeqCopySequence(para_Tips, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full);
                        errLabel_162 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        EXTRACTION_STARLET_V6::No_Tip_Error_Handling(ML_STAR, file4_Tip_Sequence, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Tip_Carrier_1mL, Tip_Carrier_300uL, Tip_Carrier_1mL_Thinprep, fileB_Thinprep, para_Tips, para_Tips, para_Tips, para_Tips);
                        }   /* end if from skip handler if no error */
                        }
                        }
                        {
                        loopCounter70 = 0;
                        while (No_IC_Error_Flag == 0)
                        {
                        loopCounter70 = loopCounter70 + 1;
                        onerror goto errLabel_163 ;
                        err.Clear();
                        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                        No_IC_Error_Flag = 1;
                        errLabel_163 : {}
                        onerror goto 0;
                        if (err.GetId() != 0)   /* skip handler if no error */
                        {
                        dialogHandle_56.SetOutput(Translate("The IC tube is not installed."), "\n", Translate("Click OK to unload the carrier and to place the tube in the correct position."));
                        if( 0 == dialogHandle_56.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        dialogHandle_56.ShowOutput(Translate("IC tube Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        if( 0 == dialogHandle_56.PlaySound("") )
                        {
                            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                        dialogHandle_43.SetOutput(Translate("Please put the IC tube in the correct location."), "\n", Translate("Then close the door and click OK to continue."));
                        dialogHandle_43.ShowOutput(Translate("IC tube Not Found"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                        }   /* end if from skip handler if no error */
                        }
                        }
                        No_Tip_Error_Flag = 0;
                        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                        if (No_IC_Error_Flag == 1)
                        {
                        Checked_IC = Translate("Installed");
                        }
                        else
                        {
                        Checked_IC = Translate("Not Installed");
                        }
                      }
                    }
                    MECC::TraceComment(Translate("********************* Check whether the extraction is installed*********************"));
                    Trace ("Catridge = ", Checked_Ctrdge);
                    Trace ("PK and Beads = ", Checked_PK);
                    Trace ("IC = ", Checked_IC);
                  }
                }
              }
              file4_Tip_Sequence = Copy_Tip_Sequence;
            }
          }
        }
        Set_Parameter();
        Tip_300ul = 0;
        Tip_1000ul = 0;
        Tip_1000ul_Part = 0;
        TipsOnDeck_1000_start = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full.GetCurrentPosition();
        TipsOnDeck_1000_end = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full.GetCount();
        TipsOnDeck_1000_Part_start = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part.GetCurrentPosition();
        TipsOnDeck_1000_Part_end = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part.GetCount();
        TipsOnDeck_300_start = ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetCurrentPosition();
        TipsOnDeck_300_end = ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetCount();
        if (file2_Rack == "RACK_005")
        {
          MECC::TraceComment(Translate("===================================================\n================= Tip Calculation =================\n==================================================="));
          Tip_1000ul_Part = TipsOnDeck_1000_Part_end - TipsOnDeck_1000_Part_start + 1;
          Tip_300ul = TipsOnDeck_300_end - TipsOnDeck_300_start + 1;
          if (TipsOnDeck_1000_Part_start == 0)
          {
               Tip_1000ul_Part = 0;
          }
          if (TipsOnDeck_300_start == 0)
          {
               Tip_300ul = 0;
          }
          Trace ("TipsOnDeck_1000_Part_start = ", TipsOnDeck_1000_Part_start);
          Trace ("TipsOnDeck_1000_Part_end = ", TipsOnDeck_1000_Part_end);
          Trace ("Tip_1000ul_Part = ", Tip_1000ul_Part);
          Trace ("TipsOnDeck_300_start = ", TipsOnDeck_300_start);
          Trace ("TipsOnDeck_300_end = ", TipsOnDeck_300_end);
          Trace ("Tip_300ul = ", Tip_300ul);
          MECC::TraceComment(Translate("===================================================\n===================================================\n==================================================="));
        }
        else
        {
          MECC::TraceComment(Translate("===================================================\n================= Tip Calculation =================\n==================================================="));
          Tip_1000ul = TipsOnDeck_1000_end - TipsOnDeck_1000_start + 1;
          Tip_300ul = TipsOnDeck_300_end - TipsOnDeck_300_start + 1;
          if (TipsOnDeck_1000_start == 0)
          {
               Tip_1000ul = 0;
          }
          if (TipsOnDeck_300_start == 0)
          {
               Tip_300ul = 0;
          }
          Trace ("TipsOnDeck_1000_start = ", TipsOnDeck_1000_start);
          Trace ("TipsOnDeck_1000_end = ", TipsOnDeck_1000_end);
          Trace ("Tip_1000ul = ", Tip_1000ul);
          Trace ("TipsOnDeck_300_start = ", TipsOnDeck_300_start);
          Trace ("TipsOnDeck_300_end = ", TipsOnDeck_300_end);
          Trace ("Tip_300ul = ", Tip_300ul);
          MECC::TraceComment(Translate("===================================================\n===================================================\n==================================================="));
        }
        if (file4_SubMethod == "Disp_PKmix")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_STARLET_V6::Disp_PKmix(ML_STAR, Sample_Cnt_Ini, para_Liquid_Class, para_Liquid_Class_2, para_Liquid_Class_3, para_Volume, para_PreAliq_Volume, para_Tips, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_PreAliq_Disp_Submerge_Depth, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_Asp_Premix_ASD, para_Disp_position, para_Disp_cLLD_On, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, file4_Tip_Sequence, Tip_Carrier_1mL, Tip_Carrier_1mL_Thinprep, Tip_Carrier_300uL, file1_SimOn, file2_Extraction_Kit, file2_Product_No, STARMag_Remain, Tub_2_Remain);
        }
        if (file4_SubMethod == "Disp_IC")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_STARLET_V6::Disp_IC(ML_STAR, para_Asp_cLLD_On, para_Asp_Submerge_Depth, para_Asp_position, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_ASD, para_Disp_position, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Liquid_Class, para_Tips, para_Volume, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file4_Disp_position, para_Disp_Submerge_Depth, para_PreAliq_Disp_Submerge_Depth, Translate("01000000"), SeqGetTotal_para_Disp_position, file4_Tip_Sequence, Tip_Carrier_1mL, Tip_Carrier_300uL, file1_SimOn, Tip_Carrier_1mL_Thinprep, para_Disp_cLLD_On);
        }
        if (file4_SubMethod == "Disp_Sample")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_STARLET_V6::Disp_Sample(ML_STAR, Sample_Cnt, Sample_Cnt_Ini, ChPattern_Chk, ChPattern_Remain, ChPattern_Remain12, para_Asp_cLLD_On, para_Asp_position, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_Disp_cLLD_On, para_PreAliq_Disp_Submerge_Depth, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file1_SimOn, Seq_SampleRacks, file2_Extraction_Kit, file2_Product_No, Clot_Occurs, file4_Tip_Sequence, ML_STAR.DWP96, Tip_Carrier_1mL, Tip_Carrier_300uL, file1_SimOn, Tip_Carrier_1mL_Thinprep, file2_Rack, SMP_CAR_32_001, SMP_CAR_32_002, SMP_CAR_32_003, SMP_CAR_24_001, SMP_CAR_24_002, SMP_CAR_24_003, SMP_CAR_24_004, SMP_CAR_12_Thinprep_001, SMP_CAR_12_Thinprep_002, SMP_CAR_12_Thinprep_003, SMP_CAR_12_Thinprep_004, SMP_CAR_12_Thinprep_005, SMP_CAR_12_Thinprep_006, SMP_CAR_12_Thinprep_007, SMP_CAR_12_Thinprep_008, Seq_SampleRacks);
          if (file2_Clot == 1)
          {
            if (Clot_Occurs == 1)
            {
              if (STEP == 5)
              {
                ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
                ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
                dialogHandle_7.SetOutput(Translate("Clot was detected or liquid was not correctly aspirated. Please Check the Sample Racks."), "\n", Translate("Put the Samples manually 96-DWP."), "\n", Translate("Check the location of the samples indicated on the pop-up screen."), "\n");
                if( 0 == dialogHandle_7.PlaySound("C:\\Seegene_Method_Setting\\Clot Error Alarm.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_7.ShowOutput(Translate("Clot Detected or Liquid Not Correctly Aspirated"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_7.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
              }
              else
              {
                if (STEP >= 7)
                {
                  if (STEP == 8)
                  {
                    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
                    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
                    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                    if (file2_Rack == "RACK_003")
                    {
                      if (Sample_Cnt > 64)
                      {
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      }
                      if (Sample_Cnt > 32)
                      {
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      }
                      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                    }
                    if (file2_Rack == "RACK_004")
                    {
                      if (Sample_Cnt > 72)
                      {
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      }
                      if (Sample_Cnt > 48)
                      {
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      }
                      if (Sample_Cnt > 24)
                      {
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      }
                      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                    }
                    if (file2_Rack == "RACK_005")
                    {
                      Unload_Carrier_Thinprep();
                    }
                    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                    dialogHandle_92.SetOutput(Translate("Clot was detected or liquid was not correctly aspirated. Please Check the Sample Racks."), "\n", Translate("Put the Samples manually 96-well plate."), "\n", Translate("Check the location of the samples indicated on the pop-up screen."), "\n");
                    if( 0 == dialogHandle_92.PlaySound("C:\\Seegene_Method_Setting\\Clot Error Alarm.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_92.ShowOutput(Translate("Clot Detected or Liquid Not Correctly Aspirated"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_92.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_90.SetOutput(Translate("Place a 96 well-plate from the Starting position"), "\n", Translate("to PCR instrument for extraction free."));
                    dialogHandle_90.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    dialogHandle_89.SetOutput(Translate("If you are ready to PCR setup,"), "\n", Translate("load the 96 well-plate on the Starting position,"), "\n", Translate("mount the carrier to the stop hook, then close the door and click OK."));
                    dialogHandle_89.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                  }
                  if (STEP == 10)
                  {
                    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
                    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
                    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                    if (file2_Rack == "RACK_004")
                    {
                      if (Sample_Cnt > 72)
                      {
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      }
                      if (Sample_Cnt > 48)
                      {
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      }
                      if (Sample_Cnt > 24)
                      {
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      }
                      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                    }
                    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                    dialogHandle_99.SetOutput(Translate("Clot was detected or liquid was not correctly aspirated. Please Check the Sample Racks."), "\n", Translate("Put the Samples manually 96-well plate."), "\n", Translate("Check the location of the samples indicated on the pop-up screen."), "\n");
                    if( 0 == dialogHandle_99.PlaySound("C:\\Seegene_Method_Setting\\Clot Error Alarm.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_99.ShowOutput(Translate("Clot Detected or Liquid Not Correctly Aspirated"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_99.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_101.SetOutput(Translate("Place a 96 well-plate from the Starting position"), "\n", Translate("to PCR instrument for extraction free."));
                    dialogHandle_101.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    dialogHandle_104.SetOutput(Translate("If you are ready to PCR setup,"), "\n", Translate("load the 96 well-plate on the Starting position,"), "\n", Translate("mount the carrier to the stop hook, then close the door and click OK."));
                    dialogHandle_104.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                  }
                }
                else
                {
                  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
                  ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
                  dialogHandle_37.SetOutput(Translate("Clot Detected or Liquid Not Correctly Aspirated. Please Check the Sample Racks."), "\n", Translate("Put the Samples manually 96-DWP."), "\n", Translate("Check the location of the samples indicated on the pop-up screen."), "\n");
                  if( 0 == dialogHandle_37.PlaySound("C:\\Seegene_Method_Setting\\Clot Error Alarm.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_37.ShowOutput(Translate("Clot Detected or Liquid Not Correctly Aspirated"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_37.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if (file4_Disp_position == 1796)
                  {
                    EXTRACTION_STARLET_V6::Move_DWP(ML_STAR, seq_DWP96_HHS, seq_DWP96, file1_SimOn, iSwap, ML_STAR.COREGripTool, Seegene_2Reagent50mLx6_1DWP_2PCR_R01_0001, Seegene_1HHS_1Magnet_1Tip_2Tube_R01_0001, HHS1);
                  }
                  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  if (file2_Rack == "RACK_003")
                  {
                    if (Sample_Cnt > 64)
                    {
                      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                    }
                    if (Sample_Cnt > 32)
                    {
                      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                    }
                    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  }
                  if (file2_Rack == "RACK_004")
                  {
                    if (Sample_Cnt > 72)
                    {
                      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                    }
                    if (Sample_Cnt > 48)
                    {
                      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                    }
                    if (Sample_Cnt > 24)
                    {
                      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                    }
                    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  }
                  if (file2_Rack == "RACK_005")
                  {
                    Unload_Carrier_Thinprep();
                  }
                  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                  if (file2_Rack == "RACK_005")
                  {
                    dialogHandle_36.SetOutput(Translate("Place the 96-DWP back to the starting position."));
                    dialogHandle_36.ShowOutput(Translate("Clot Detected or Liquid Not Correctly Aspirated"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  }
                  else
                  {
                    dialogHandle_35.SetOutput(Translate("Place the 96-DWP back to the starting position and Close the door."));
                    dialogHandle_35.ShowOutput(Translate("Clot Detected or Liquid Not Correctly Aspirated"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    dialogHandle_38.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."));
                    dialogHandle_38.ShowOutput(Translate("Clot Detected or Liquid Not Correctly Aspirated"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  }
                  if (file2_Rack == "RACK_005")
                  {
                    dialogHandle_34.SetOutput(Translate("Sample transfer step is completed."), "\n", Translate("Prepare 1000 uL & 300uL Tip Carrier for next step and Close the door."), "\n", Translate("Click OK button to the next step."));
                    if( 0 == dialogHandle_34.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    dialogHandle_34.ShowOutput(Translate("Prepare 1000 uL & 300uL Tip Carrier"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                    if( 0 == dialogHandle_34.PlaySound("") )
                    {
                          MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    Use_All_Tips_Part = 0;
                    Use_300ul_Tips = 0;
                    file33.AddField("Tip_Sequence", file33_Tip_Sequence, hslInteger);
                    if( 0 == file33.Open("C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls" + " " + "'Reconstructed Method$'", hslRead) )
                    {
                          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls", "HxMetEdCompCmd");
                    }
                    {
                      loopCounter1 = 0;
                      while (
                         (file33.Eof() == 0)
                      )
                      {
                        loopCounter1 = loopCounter1 + 1;
                        if( 0 == file33.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if (file33_Tip_Sequence == 1)
                        {
                        Use_All_Tips_Part = Use_All_Tips_Part + 1;
                        }
                        if (file33_Tip_Sequence == 3)
                        {
                        Use_300ul_Tips = Use_300ul_Tips + 1;
                        }
                      }
                    }
                    if( 0 != file33.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    file33.RemoveFields();
                    if (Use_All_Tips_Part > 0)
                    {
                      TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, Translate("All_Tips_Part_Counter"), ML_STAR, 999);
                      TipsOnDeck_New_Part = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part.GetCount();
                      Trace ("TipsOnDeck_New_Part = ", TipsOnDeck_New_Part);
                    }
                    if (Use_300ul_Tips > 0)
                    {
                      TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("All_300ul_Tips_Counter"), ML_STAR, 999);
                      TipsOnDeck_300 = ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetCount();
                      Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
                    }
                    EXTRACTION_STARLET_V6::Check_Tips_Thinprep(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_All_Tips_Part, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, file1_SimOn, STEP, StepChk_Ctrdg_Flag);
                    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  }
                  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                  if (file4_Disp_position == 1796)
                  {
                    EXTRACTION_STARLET_V6::Move_DWP(ML_STAR, seq_DWP96, seq_DWP96_HHS, file1_SimOn, iSwap, ML_STAR.COREGripTool, Seegene_2Reagent50mLx6_1DWP_2PCR_R01_0001, Seegene_1HHS_1Magnet_1Tip_2Tube_R01_0001, HHS1);
                  }
                }
              }
            }
            else
            {
              if (fileB_Thinprep == "true")
              {
                ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
                ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
                ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                Unload_Carrier_Thinprep();
                dialogHandle_5.SetOutput(Translate("Sample transfer step is completed."), "\n", Translate("Prepare 1000 uL & 300uL Tip Carrier for next step."), "\n", Translate("Click OK button to the next step."));
                if( 0 == dialogHandle_5.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_5.ShowOutput(Translate("Prepare 1000 uL & 300uL Tip Carrier"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_5.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                Use_All_Tips_Part = 0;
                Use_300ul_Tips = 0;
                file33.AddField("Tip_Sequence", file33_Tip_Sequence, hslInteger);
                if( 0 == file33.Open("C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls" + " " + "'Reconstructed Method$'", hslRead) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls", "HxMetEdCompCmd");
                }
                {
                  loopCounter1 = 0;
                  while (
                     (file33.Eof() == 0)
                  )
                  {
                    loopCounter1 = loopCounter1 + 1;
                    if( 0 == file33.ReadRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    if (file33_Tip_Sequence == 1)
                    {
                      Use_All_Tips_Part = Use_All_Tips_Part + 1;
                    }
                    if (file33_Tip_Sequence == 3)
                    {
                      Use_300ul_Tips = Use_300ul_Tips + 1;
                    }
                  }
                }
                if( 0 != file33.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                file33.RemoveFields();
                if (Use_All_Tips_Part > 0)
                {
                  TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, Translate("All_Tips_Part_Counter"), ML_STAR, 999);
                  TipsOnDeck_New_Part = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part.GetCount();
                  Trace ("TipsOnDeck_New_Part = ", TipsOnDeck_New_Part);
                }
                if (Use_300ul_Tips > 0)
                {
                  TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("All_300ul_Tips_Counter"), ML_STAR, 999);
                  TipsOnDeck_300 = ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetCount();
                  Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
                }
                EXTRACTION_STARLET_V6::Check_Tips_Thinprep(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_All_Tips_Part, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, file1_SimOn, STEP, StepChk_Ctrdg_Flag);
                ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                if (file2_Product_No == "PRODUCT_ANY_017")
                {
                  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                }
                if (file2_Product_No == "PRODUCT_ANY_018")
                {
                  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                }
                ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
              }
              else
              {
                if (file2_Sample_Unload == 1)
                {
                  if (file2_Product_No == "PRODUCT_TRF_003")
                  {
                    Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
                    Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
                    Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
                    Carrier_Unload(file4_Asp_Base1);
                  }
                  else
                  {
                    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
                    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
                    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                    if (file2_Rack == "RACK_003")
                    {
                      if (Sample_Cnt > 64)
                      {
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      }
                      if (Sample_Cnt > 32)
                      {
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      }
                      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                    }
                    if (file2_Rack == "RACK_004")
                    {
                      if (Sample_Cnt > 72)
                      {
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      }
                      if (Sample_Cnt > 48)
                      {
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      }
                      if (Sample_Cnt > 24)
                      {
                        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      }
                      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                    }
                    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                  }
                }
                if (STEP == 8)
                {
                  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
                  ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
                  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                  dialogHandle_127.SetOutput(Translate("Place a 96 well-plate from the Starting position"), "\n", Translate("to PCR instrument for extraction free."));
                  if( 0 == dialogHandle_127.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_127.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_127.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_87.SetOutput(Translate("If you are ready to PCR setup,"), "\n", Translate("load the 96 well-plate on the Starting position,"), "\n", Translate("mount the carrier to the stop hook, then close the door and click OK."));
                  dialogHandle_87.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                }
                if (STEP == 10)
                {
                  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
                  ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
                  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                  dialogHandle_122.SetOutput(Translate("Place a 96 well-plate from the Starting position"), "\n", Translate("to PCR instrument for extraction free."));
                  if( 0 == dialogHandle_122.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_122.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_122.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_102.SetOutput(Translate("If you are ready to PCR setup,"), "\n", Translate("load the 96 well-plate on the Starting position,"), "\n", Translate("mount the carrier to the stop hook, then close the door and click OK."));
                  dialogHandle_102.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                }
              }
            }
          }
          else
          {
            if (fileB_Thinprep == "true")
            {
              ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
              ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
              ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              Unload_Carrier_Thinprep();
              dialogHandle_6.SetOutput(Translate("Sample transfer step is completed."), "\n", Translate("Prepare 1000 uL & 300uL Tip Carrier for next step."), "\n", Translate("Click OK button to the next step."));
              if( 0 == dialogHandle_6.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              dialogHandle_6.ShowOutput(Translate("Prepare 1000 uL & 300uL Tip Carrier"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              if( 0 == dialogHandle_6.PlaySound("") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              Use_All_Tips_Part = 0;
              Use_300ul_Tips = 0;
              file33.AddField("Tip_Sequence", file33_Tip_Sequence, hslInteger);
              if( 0 == file33.Open("C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls" + " " + "'Reconstructed Method$'", hslRead) )
              {
                    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet Reconstructed Method List.xls", "HxMetEdCompCmd");
              }
              {
                loopCounter1 = 0;
                while (
                   (file33.Eof() == 0)
                )
                {
                  loopCounter1 = loopCounter1 + 1;
                  if( 0 == file33.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if (file33_Tip_Sequence == 1)
                  {
                    Use_All_Tips_Part = Use_All_Tips_Part + 1;
                  }
                  if (file33_Tip_Sequence == 3)
                  {
                    Use_300ul_Tips = Use_300ul_Tips + 1;
                  }
                }
              }
              if( 0 != file33.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              file33.RemoveFields();
              if (Use_All_Tips_Part > 0)
              {
                TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, Translate("All_Tips_Part_Counter"), ML_STAR, 999);
                TipsOnDeck_New_Part = ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part.GetCount();
                Trace ("TipsOnDeck_New_Part = ", TipsOnDeck_New_Part);
              }
              if (Use_300ul_Tips > 0)
              {
                TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("All_300ul_Tips_Counter"), ML_STAR, 999);
                TipsOnDeck_300 = ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetCount();
                Trace ("TipsOnDeck_300 = ", TipsOnDeck_300);
              }
              EXTRACTION_STARLET_V6::Check_Tips_Thinprep(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Sample_Cnt_Ini, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Use_All_Tips_Part, Use_300ul_Tips, Random_Access, file2_Code, file2_PCR_Remain, file7_PCR_Remain, file9_PCR_Remain, file11_PCR_Remain, file2_Set_No, file2_PC_No, file2_WTC_No, file2_NC_No, file2_SD_No, file7_PC_No, file7_WTC_No, file7_NC_No, file7_SD_No, file9_PC_No, file9_WTC_No, file9_NC_No, file9_SD_No, file11_PC_No, file11_WTC_No, file11_NC_No, file11_SD_No, file1_SimOn, STEP, StepChk_Ctrdg_Flag);
              ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              if (file2_Product_No == "PRODUCT_ANY_017")
              {
                ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              }
              if (file2_Product_No == "PRODUCT_ANY_018")
              {
                ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              }
              ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
            }
            else
            {
              if (file2_Sample_Unload == 1)
              {
                ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
                ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
                ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                if (file2_Rack == "RACK_003")
                {
                  if (Sample_Cnt > 64)
                  {
                    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  }
                  if (Sample_Cnt > 32)
                  {
                    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  }
                  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                }
                if (file2_Rack == "RACK_004")
                {
                  if (Sample_Cnt > 72)
                  {
                    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  }
                  if (Sample_Cnt > 48)
                  {
                    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  }
                  if (Sample_Cnt > 24)
                  {
                    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                  }
                  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                }
                ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              }
              if (STEP == 8)
              {
                ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
                ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
                ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                dialogHandle_119.SetOutput(Translate("Place a 96 well-plate from the Starting position"), "\n", Translate("to PCR instrument for extraction free."));
                if( 0 == dialogHandle_119.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_119.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_119.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_88.SetOutput(Translate("If you are ready to PCR setup,"), "\n", Translate("load the 96 well-plate on the Starting position,"), "\n", Translate("mount the carrier to the stop hook, then close the door and click OK."));
                dialogHandle_88.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
              }
              if (STEP == 10)
              {
                ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
                ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
                ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
                ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
                dialogHandle_126.SetOutput(Translate("Place a 96 well-plate from the Starting position"), "\n", Translate("to PCR instrument for extraction free."));
                if( 0 == dialogHandle_126.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_126.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_126.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_103.SetOutput(Translate("If you are ready to PCR setup,"), "\n", Translate("load the 96 well-plate on the Starting position,"), "\n", Translate("mount the carrier to the stop hook, then close the door and click OK."));
                dialogHandle_103.ShowOutput(Translate("Extraction free"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
                ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
              }
            }
          }
        }
        if (file4_SubMethod == "Incubate")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_STARLET_V6::Incubate(para_Incu_Time, para_Incu_Temp, para_Incu_Speed, file1_SimOn, HHS1, ML_STAR, Sample_Cnt, Sample_Cnt_Ini, ChPattern_Chk, ChPattern_Remain, ChPattern_Remain2, para_Asp_cLLD_On, para_Asp_position, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_Disp_cLLD_On, para_PreAliq_Disp_Submerge_Depth, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file4_Step_Name, file4_Tip_Sequence, para_Asp_position_2nd, STARMag_Remain, Tip_Carrier_1mL, Tip_Carrier_300uL, file1_SimOn, Tip_Carrier_1mL_Thinprep, ChPattern_Chk4);
        }
        if (file4_SubMethod == "Move_DWP")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_STARLET_V6::Move_DWP(ML_STAR, para_Start_Location, para_Target_Location, file1_SimOn, iSwap, ML_STAR.COREGripTool, Seegene_2Reagent50mLx6_1DWP_2PCR_R01_0001, Seegene_1HHS_1Magnet_1Tip_2Tube_R01_0001, HHS1);
          if (file4_Target_Location == 1796)
          {
            if (file1_SimOn == 0)
            {
              HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
              HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
            }
          }
        }
        if (file4_SubMethod == "DispAndWaste_Buffer")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_STARLET_V6::DispAndWaste_Buffer(ML_STAR, Sample_Cnt, Sample_Cnt_Ini, ChPattern_Chk, ChPattern_Remain, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Disp_position, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, ML_STAR.LiquidWaste, file4_Step_Name, file4_Tip_Sequence, Tip_Carrier_1mL, Tip_Carrier_300uL, file1_SimOn, Tip_Carrier_1mL_Thinprep, para_Asp_ADC_On);
        }
        if (file4_SubMethod == "Disp_Bead")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_STARLET_V6::Disp_Bead(ML_STAR, Sample_Cnt, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Premix_ASD, para_Disp_position, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Liquid_Class, para_Tips, para_Volume, STARMag_Remain, para_PreAliq_Volume, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, Tub_2_Remain, para_BB_Position, para_BB_Position_2nd, para_Bead_Position, para_Bead_Position_2nd, para_Liquid_Class_2, file4_Tip_Sequence, para_Liquid_Class_3, Tip_Carrier_1mL, Tip_Carrier_300uL, file1_SimOn, Tip_Carrier_1mL_Thinprep, file2_Product_No);
        }
        if (file4_SubMethod == "Disp_Buffer")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_STARLET_V6::Disp_Buffer(ML_STAR, Sample_Cnt, Sample_Cnt_Ini, ChPattern_Chk, ChPattern_Remain, ChPattern_Remain2, para_Asp_cLLD_On, para_Asp_position, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_Disp_cLLD_On, para_PreAliq_Disp_Submerge_Depth, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file4_Step_Name, file4_Tip_Sequence, para_Asp_position_2nd, STARMag_Remain, Tip_Carrier_1mL, Tip_Carrier_300uL, file1_SimOn, Tip_Carrier_1mL_Thinprep, ChPattern_Chk4, file2_Extraction_Kit, ML_STAR.Tub_1, ML_STAR.Tub_1_2);
        }
        if (file4_SubMethod == "Disp_Water")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_STARLET_V6::Disp_Water(ML_STAR, Sample_Cnt, Sample_Cnt_Ini, ChPattern_Chk, ChPattern_Remain, ChPattern_Remain2, para_Asp_cLLD_On, para_Asp_position, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_cLLD_On, para_PreAliq_Submerge_Depth, para_PreAliq_Bottom, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file4_Step_Name, file4_Tip_Sequence, para_Asp_position_2nd, STARMag_Remain, Tip_Carrier_1mL, Tip_Carrier_300uL, file1_SimOn, Tip_Carrier_1mL_Thinprep, ChPattern_Chk4);
        }
        if (file4_SubMethod == "Disp_Buffer_2")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_STARLET_V6::Disp_Buffer_2(ML_STAR, Sample_Cnt, Sample_Cnt_Ini, ChPattern_Chk, ChPattern_Remain, ChPattern_Remain2, para_Asp_cLLD_On, para_Asp_position, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_Disp_cLLD_On, para_PreAliq_Disp_Submerge_Depth, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file4_Step_Name, file4_Tip_Sequence, para_Asp_position_2nd, STARMag_Remain, Tip_Carrier_1mL, Tip_Carrier_300uL, file1_SimOn, Tip_Carrier_1mL_Thinprep, ChPattern_Chk4, file2_Extraction_Kit);
        }
        if (file4_SubMethod == "WasteBuffer")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_STARLET_V6::WasteBuffer(ML_STAR, Sample_Cnt, ChPattern_Chk, ChPattern_Remain, para_Asp_cLLD_On, para_Asp_position, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Disp_position, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Liquid_Class, para_Tips, para_Volume, file4_Tip_Sequence, para_Reuse_Tip, Tip_Carrier_1mL, Tip_Carrier_300uL, file1_SimOn, Tip_Carrier_1mL_Thinprep);
        }
        if (file4_SubMethod == "Start_Temp_HHS")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_STARLET_V6::Start_Temp_HHS(file1_SimOn, HHS1, para_Incu_Temp);
        }
        if (file4_SubMethod == "Stop_Temp_HHS")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          EXTRACTION_STARLET_V6::Stop_Temp_HHS(file1_SimOn, HHS1);
        }
        if (file4_SubMethod == "Build_2X_Enzyme_1")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          LiquidNotFound_Handling = 0;
          PCR_SET_UP_STARLET_V6::cLLD_Checking_1(ML_STAR, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_cLLD_On, para_PreAliq_Submerge_Depth, para_PreAliq_Bottom, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file2_Asp_position_2nd, file2_PC_No, file2_WTC_No, file2_NC_No, file7_PC_No, file7_WTC_No, file7_NC_No, file9_PC_No, file9_WTC_No, file9_NC_No, file11_PC_No, file11_WTC_No, file11_NC_No, Random_Access, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, file4_Disp_position, file1_SimOn, file4_Step_Name, file4_Tip_Sequence, PCR_Remain_PRODUCT_001, PCR_Remain_PRODUCT_002, PCR_Remain_PRODUCT_003, PCR_Remain_PRODUCT_004, file2_Set_No, file4_No, file2_SD_No, file7_SD_No, file9_SD_No, file11_SD_No, Tip_Carrier_1mL, Tip_Carrier_300uL, LiquidNotFound, LiquidNotFound_Handling);
          if (LiquidNotFound == 1)
          {
            dialogHandle_1.SetOutput(Translate("Please check the PCR reagent."), "\n", Translate(""), "\n", Translate("Put the PCR reagents to appropriate positions."), "\n", Translate(""), "\n", Translate("The PCR reagent positions are shown in [Information > PCR Information]."), "\n", Translate(""), "\n", Translate("Click 'OK' to unload Tip Carriers."));
            if( 0 == dialogHandle_1.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_1.ShowOutput(Translate("Check the PCR reagent"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_1.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            dialogHandle_3.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."), "\n");
            dialogHandle_3.ShowOutput(Translate("Check the PCR reagent"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
            LiquidNotFound_Handling = 1;
            PCR_SET_UP_STARLET_V6::cLLD_Checking_1(ML_STAR, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_cLLD_On, para_PreAliq_Submerge_Depth, para_PreAliq_Bottom, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file2_Asp_position_2nd, file2_PC_No, file2_WTC_No, file2_NC_No, file7_PC_No, file7_WTC_No, file7_NC_No, file9_PC_No, file9_WTC_No, file9_NC_No, file11_PC_No, file11_WTC_No, file11_NC_No, Random_Access, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, file4_Disp_position, file1_SimOn, file4_Step_Name, file4_Tip_Sequence, PCR_Remain_PRODUCT_001, PCR_Remain_PRODUCT_002, PCR_Remain_PRODUCT_003, PCR_Remain_PRODUCT_004, file2_Set_No, file4_No, file2_SD_No, file7_SD_No, file9_SD_No, file11_SD_No, Tip_Carrier_1mL, Tip_Carrier_300uL, LiquidNotFound, LiquidNotFound_Handling);
          }
          PCR_SET_UP_STARLET_V6::Build_2X_Enzyme_1(ML_STAR, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_Disp_cLLD_On, para_PreAliq_Disp_Submerge_Depth, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file2_Asp_position_2nd, file2_PC_No, file2_WTC_No, file2_NC_No, file7_PC_No, file7_WTC_No, file7_NC_No, file9_PC_No, file9_WTC_No, file9_NC_No, file11_PC_No, file11_WTC_No, file11_NC_No, Random_Access, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, file4_Disp_position, file1_SimOn, file4_Step_Name, file4_Tip_Sequence, PCR_Remain_PRODUCT_001, PCR_Remain_PRODUCT_002, PCR_Remain_PRODUCT_003, PCR_Remain_PRODUCT_004, file2_Set_No, file4_No, file2_SD_No, file7_SD_No, file9_SD_No, file11_SD_No, Tip_Carrier_1mL, Tip_Carrier_300uL, file2_2X_Enzyme_Height, file2_Plate);
        }
        if (file4_SubMethod == "Build_2X_Enzyme_2")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          PCR_SET_UP_STARLET_V6::Build_2X_Enzyme_2(ML_STAR, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_cLLD_On, para_PreAliq_Submerge_Depth, para_PreAliq_Bottom, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file2_Asp_position_2nd, file2_PC_No, file2_WTC_No, file2_NC_No, file7_PC_No, file7_WTC_No, file7_NC_No, file9_PC_No, file9_WTC_No, file9_NC_No, file11_PC_No, file11_WTC_No, file11_NC_No, Random_Access, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, file4_Disp_position, file1_SimOn, file4_Step_Name, file4_Tip_Sequence, PCR_Remain_PRODUCT_001_1st_Tube, PCR_Remain_PRODUCT_002_1st_Tube, PCR_Remain_PRODUCT_003_1st_Tube, PCR_Remain_PRODUCT_004_1st_Tube, file2_Set_No, file4_No, file2_SD_No, file7_SD_No, file9_SD_No, file11_SD_No, Tip_Carrier_1mL, Tip_Carrier_300uL, file3_2X_Enzyme_Height, file2_Plate);
        }
        if (file4_SubMethod == "Build_MM_1")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          LiquidNotFound_Handling = 0;
          PCR_SET_UP_STARLET_V6::cLLD_Checking_1(ML_STAR, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_cLLD_On, para_PreAliq_Submerge_Depth, para_PreAliq_Bottom, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file2_Asp_position_2nd, file2_PC_No, file2_WTC_No, file2_NC_No, file7_PC_No, file7_WTC_No, file7_NC_No, file9_PC_No, file9_WTC_No, file9_NC_No, file11_PC_No, file11_WTC_No, file11_NC_No, Random_Access, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, file4_Disp_position, file1_SimOn, file4_Step_Name, file4_Tip_Sequence, PCR_Remain_PRODUCT_001, PCR_Remain_PRODUCT_002, PCR_Remain_PRODUCT_003, PCR_Remain_PRODUCT_004, file2_Set_No, file4_No, file2_SD_No, file7_SD_No, file9_SD_No, file11_SD_No, Tip_Carrier_1mL, Tip_Carrier_300uL, LiquidNotFound, LiquidNotFound_Handling);
          if (LiquidNotFound == 1)
          {
            dialogHandle_2.SetOutput(Translate("Please check the PCR reagent."), "\n", Translate(""), "\n", Translate("Put the PCR reagents to appropriate positions."), "\n", Translate(""), "\n", Translate("The PCR reagent positions are shown in [Information > PCR Information]."), "\n", Translate(""), "\n", Translate("Click 'OK' to unload Tip Carriers."));
            if( 0 == dialogHandle_2.PlaySound("C:\\Seegene_Method_Setting\\Unlock Door.wav") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            dialogHandle_2.ShowOutput(Translate("Check the PCR reagent"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            if( 0 == dialogHandle_2.PlaySound("") )
            {
                  MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            dialogHandle_4.SetOutput(Translate("Are you sure that the instrument is ready to resume?"), "\n", Translate("If you are, click 'OK' to continue."), "\n");
            dialogHandle_4.ShowOutput(Translate("Check the PCR reagent"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
            LiquidNotFound_Handling = 1;
            PCR_SET_UP_STARLET_V6::cLLD_Checking_1(ML_STAR, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_cLLD_On, para_PreAliq_Submerge_Depth, para_PreAliq_Bottom, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file2_Asp_position_2nd, file2_PC_No, file2_WTC_No, file2_NC_No, file7_PC_No, file7_WTC_No, file7_NC_No, file9_PC_No, file9_WTC_No, file9_NC_No, file11_PC_No, file11_WTC_No, file11_NC_No, Random_Access, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, file4_Disp_position, file1_SimOn, file4_Step_Name, file4_Tip_Sequence, PCR_Remain_PRODUCT_001, PCR_Remain_PRODUCT_002, PCR_Remain_PRODUCT_003, PCR_Remain_PRODUCT_004, file2_Set_No, file4_No, file2_SD_No, file7_SD_No, file9_SD_No, file11_SD_No, Tip_Carrier_1mL, Tip_Carrier_300uL, LiquidNotFound, LiquidNotFound_Handling);
          }
          PCR_SET_UP_STARLET_V6::Build_MM_1(ML_STAR, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_Disp_cLLD_On, para_PreAliq_Disp_Submerge_Depth, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file2_Asp_position_2nd, file2_PC_No, file2_WTC_No, file2_NC_No, file7_PC_No, file7_WTC_No, file7_NC_No, file9_PC_No, file9_WTC_No, file9_NC_No, file11_PC_No, file11_WTC_No, file11_NC_No, Random_Access, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, file4_Disp_position, file1_SimOn, file4_Step_Name, file4_Tip_Sequence, PCR_Remain_PRODUCT_001, PCR_Remain_PRODUCT_002, PCR_Remain_PRODUCT_003, PCR_Remain_PRODUCT_004, file2_Set_No, file4_No, file2_SD_No, file7_SD_No, file9_SD_No, file11_SD_No, Tip_Carrier_1mL, Tip_Carrier_300uL);
        }
        if (file4_SubMethod == "Build_MM_2")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          PCR_SET_UP_STARLET_V6::Build_MM_2(ML_STAR, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_Disp_cLLD_On, para_PreAliq_Disp_Submerge_Depth, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file2_Asp_position_2nd, file2_PC_No, file2_WTC_No, file2_NC_No, file7_PC_No, file7_WTC_No, file7_NC_No, file9_PC_No, file9_WTC_No, file9_NC_No, file11_PC_No, file11_WTC_No, file11_NC_No, Random_Access, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, file4_Disp_position, file1_SimOn, file4_Step_Name, file4_Tip_Sequence, PCR_Remain_PRODUCT_001_1st_Tube, PCR_Remain_PRODUCT_002_1st_Tube, PCR_Remain_PRODUCT_003_1st_Tube, PCR_Remain_PRODUCT_004_1st_Tube, file2_Set_No, file4_No, file2_SD_No, file7_SD_No, file9_SD_No, file11_SD_No, Tip_Carrier_1mL, Tip_Carrier_300uL);
        }
        if (file4_SubMethod == "Distribute_MM_1")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          PCR_SET_UP_STARLET_V6::Distribute_MM_1(ML_STAR, Sample_Cnt_Ini, para_Asp_cLLD_On, para_Asp_Submerge_Depth, para_Asp_position, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_ASD, para_Disp_position, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Liquid_Class, para_Tips, para_Volume, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file2_PC_No, file2_WTC_No, file2_NC_No, file4_Disp_position, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, file2_PC_No, file7_PC_No, file9_PC_No, file11_PC_No, file2_WTC_No, file7_WTC_No, file9_WTC_No, file11_WTC_No, file2_NC_No, file7_NC_No, file9_NC_No, file11_NC_No, para_Disp_Submerge_Depth, para_PreAliq_Disp_Submerge_Depth, Random_Access, Translate("00000000"), SeqGetTotal_para_Disp_position, file2_Set_No, file4_Tip_Sequence, file2_SD_No, file7_SD_No, file9_SD_No, file11_SD_No, Tip_Carrier_1mL, Tip_Carrier_300uL, file1_SimOn, file2_Plate);
        }
        if (file4_SubMethod == "Distribute_MM_2")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          PCR_SET_UP_STARLET_V6::Distribute_MM_2(ML_STAR, Sample_Cnt, para_Asp_cLLD_On, para_Asp_Submerge_Depth, para_Asp_position, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_ASD, para_Disp_position, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Liquid_Class, para_Tips, para_Volume, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, file2_PC_No, file2_WTC_No, file2_NC_No, file4_Disp_position, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, file2_PC_No, file7_PC_No, file9_PC_No, file11_PC_No, file2_WTC_No, file7_WTC_No, file9_WTC_No, file11_WTC_No, file2_NC_No, file7_NC_No, file9_NC_No, file11_NC_No, para_Disp_Submerge_Depth, para_PreAliq_Disp_Submerge_Depth, Random_Access, Translate("00000000"), SeqGetTotal_para_Disp_position, file2_Set_No, file4_Tip_Sequence, file2_SD_No, file7_SD_No, file9_SD_No, file11_SD_No, Tip_Carrier_1mL, Tip_Carrier_300uL, file1_SimOn, file2_Plate);
        }
        if (file4_SubMethod == "Transfer_NC")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          PCR_SET_UP_STARLET_V6::Transfer_NC(ML_STAR, Sample_Cnt, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_Disp_cLLD_On, para_PreAliq_Disp_Submerge_Depth, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, SeqGetTotal_NC, Random_Access, file4_Tip_Sequence, Tip_Carrier_1mL, Tip_Carrier_300uL, file1_SimOn);
        }
        if (file4_SubMethod == "Transfer_Sample")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          PCR_SET_UP_STARLET_V6::Transfer_Sample(ML_STAR, Sample_Cnt, para_Asp_cLLD_On, para_Asp_position, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, para_Disp_position, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Liquid_Class, para_Tips, para_Volume, file2_Set_No, ChPattern_Chk, ChPattern_Remain, ChPattern_Remain2, file4_Disp_position, Sample_Cnt_PRODUCT_001, Sample_Cnt_PRODUCT_002, Sample_Cnt_PRODUCT_003, Sample_Cnt_PRODUCT_004, Random_Access, file4_Tip_Sequence, Tip_Carrier_1mL, Tip_Carrier_300uL, file1_SimOn, file2_Set_No, file2_Product_No, file2_Plate, file4_Disp_Postmix_Cycle, file4_Disp_Postmix_Vol, file4_Disp_Submerge_Depth, file4_Disp_cLLD_On);
        }
        if (file4_SubMethod == "Transfer_PC")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          PCR_SET_UP_STARLET_V6::Transfer_PC(ML_STAR, Sample_Cnt, para_Asp_cLLD_On, para_Asp_position, para_Asp_position_2nd, para_Asp_Submerge_Depth, para_Asp_Bottom_Height, para_Asp_Retract_Distance, para_Asp_Premix_Vol, para_Asp_Premix_Cycle, para_Asp_Premix_ASD, file4_Asp_ADC_On, para_Disp_cLLD_On, para_Disp_position, para_Disp_Submerge_Depth, para_Disp_Bottom_Height, para_Disp_Retract_Distance, para_Disp_Postmix_Vol, para_Disp_Postmix_Cycle, para_Disp_Postmix_ASD, para_Liquid_Class, para_Liquid_Class_2, para_Tips, para_Volume, para_PreAliq_cLLD_On, para_PreAliq_Submerge_Depth, para_PreAliq_Disp_Bottom_Height, para_PreAliq_Retract_Distance, para_PreAliq_Volume, Random_Access, file4_Tip_Sequence, Tip_Carrier_1mL, Tip_Carrier_300uL, file1_SimOn, file4_No, file4_Step_Name, file2_PPC_No, file7_PPC_No, file9_PPC_No, file11_PPC_No, file2_Product_Name, file7_Product_Name, file9_Product_Name, file11_Product_Name, Tip_Carrier_1mL_Thinprep);
        }
        if (file4_SubMethod == "Carrier_Unload")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          if (file4_No == 2)
          {
            Carrier_Unload(7);
          }
          else
          {
            Carrier_Unload(file4_Asp_Base1);
          }
        }
        if (file4_SubMethod == "Carrier_Load")
        {
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          Trace ("++++++++++++++++++++ ", file4_Step_Name, " ++++++++++++++++++++");
          Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
          if (file4_No == 2)
          {
            Carrier_Load(7);
          }
          else
          {
            Carrier_Load(file4_Asp_Base1);
          }
        }
        Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
        Trace ("+++++++++++++++ ", file4_Step_Name, " - Submethod Complete +++++++++++++++");
        Trace ("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++");
        if (fileB_Thinprep == "true")
        {
          if (file4_Tip_Sequence == 1)
          {
            SeqCopySequence(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, para_Tips);
          }
          StepChk_Build = StrLeft(file4_Step_Name, 5);
          if (StepChk_Build == "Build")
          {
            if (StepChk_Thinprep_AfterSample == 1)
            {
              SeqCopySequence(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, para_Tips);
            }
          }
        }
        else
        {
          if (file4_Tip_Sequence == 1)
          {
            SeqCopySequence(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, para_Tips);
          }
        }
        if (file4_Tip_Sequence == 2)
        {
          SeqCopySequence(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, para_Tips);
        }
        if (file4_Tip_Sequence == 3)
        {
          SeqCopySequence(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, para_Tips);
        }
      }
    }
    MECC::TraceComment(Translate("++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++\n+++++++++++++++++++++++ Method Complete ++++++++++++++++++++++++\n++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++"));
    HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
    if (Use_All_Tips_Part > 0)
    {
      TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Part, Translate("All_Tips_Part_Counter"), ML_STAR);
    }
    if (Use_All_Tips_Full > 0)
    {
      TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, Translate("All_Tips_Full_Counter"), ML_STAR);
    }
    if (Use_All_Tips_Thinprep > 0)
    {
      TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Thinprep, Translate("All_Tips_Thinprep_Counter"), ML_STAR);
    }
    if (Use_300ul_Tips > 0)
    {
      TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("All_300ul_Tips_Counter"), ML_STAR);
    }
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    if (file2_Carrier_Unload == 0)
    {
      dialogHandle_8.SetOutput(Translate("Method is completed."), "\n", Translate(""), "\n", Translate("Click OK to unload the carrier."));
      if( 0 == dialogHandle_8.PlaySound("C:\\Seegene_Method_Setting\\REMINDER.WAV") )
      {
            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      dialogHandle_8.ShowOutput(Translate("Complete"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      if( 0 == dialogHandle_8.PlaySound("") )
      {
            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    MECC::TraceComment(Translate("*********************************************************************\n********************* UNLOAD CARRIER ****************\n*********************************************************************"));
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    if (file2_Rack == "RACK_003")
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (file2_Rack == "RACK_004")
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (file2_Rack == "RACK_005")
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    if (file2_Clot == 1)
    {
      if (Clot_Occurs == 1)
      {
        if (STEP == 7)
        {
          dialogHandle_91.SetOutput(Translate("Clot was detected or liquid was not correctly aspirated. Please Check the Sample Racks."), "\n", Translate("Put the Samples manually 96-well plate."), "\n", Translate("Check the location of the samples indicated on the pop-up screen."), "\n");
          if( 0 == dialogHandle_91.PlaySound("C:\\Seegene_Method_Setting\\Clot Error Alarm.wav") )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          dialogHandle_91.ShowOutput(Translate("Clot Detected or Liquid Not Correctly Aspirated"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          if( 0 == dialogHandle_91.PlaySound("") )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        if (STEP == 9)
        {
          dialogHandle_100.SetOutput(Translate("Clot was detected or liquid was not correctly aspirated. Please Check the Sample Racks."), "\n", Translate("Put the Samples manually 96-well plate."), "\n", Translate("Check the location of the samples indicated on the pop-up screen."), "\n");
          if( 0 == dialogHandle_100.PlaySound("C:\\Seegene_Method_Setting\\Clot Error Alarm.wav") )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          dialogHandle_100.ShowOutput(Translate("Clot Detected or Liquid Not Correctly Aspirated"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          if( 0 == dialogHandle_100.PlaySound("") )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
    }
    if (file2_Carrier_Unload == 1)
    {
      dialogHandle_17.SetOutput(Translate("Method is completed."));
      if( 0 == dialogHandle_17.PlaySound("C:\\Seegene_Method_Setting\\REMINDER.WAV") )
      {
            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      dialogHandle_17.ShowOutput(Translate("Complete"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      if( 0 == dialogHandle_17.PlaySound("") )
      {
            MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    TIP_PRESENT_CHECK::_ExitLibrary();
    EXTRACTION_STARLET_V6::_ExitLibrary();
    PCR_SET_UP_STARLET_V6::_ExitLibrary();
  } }
