global device ML_STAR ("STARlet_v6.1 - EMEC Launcher - v1.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "STARlet_v6.1 - EMEC Launcher - v1.res"
variable intNumberOfSample;
variable loopCounter3;
file file1;
variable all_tips_300ul_full_counter;
variable all_tips_1000ul_full_counter;
variable fileB_PRODUCT_7;
variable fileB_PRODUCT_8;
variable fileB_12mm;
variable fileB_PRODUCT_9;
variable Sample_Cnt_PRODUCT_010;
variable fileB_No_;
variable fileB_PRODUCT_10;
variable Sample_Cnt_PRODUCT_011;
variable fileB_1_5ml;
variable fileB_16mm;
variable fileB_PRODUCT_11;
variable Sample_Cnt_PRODUCT_012;
variable fileB_Barcode;
variable fileB_PRODUCT_12;
variable Sample_Cnt_PRODUCT_001;
variable Sample_Cnt_PRODUCT_002;
variable Sample_Cnt_Flag;
variable Sample_Cnt_PRODUCT_003;
variable Sample_Cnt;
variable Sample_Cnt_PRODUCT_004;
variable Sample_Cnt_PRODUCT_005;
variable fileB_PRODUCT_1;
variable Sample_Cnt_PRODUCT_006;
variable Sample_Cnt_PRODUCT_007;
variable fileB_PRODUCT_2;
variable Sample_Cnt_PRODUCT_008;
variable fileB_PRODUCT_3;
variable fileB_PRODUCT_4;
variable Sample_Cnt_PRODUCT_009;
variable fileB_Urine;
variable fileB_PRODUCT_5;
variable fileB_Thinprep;
variable loopCounter5;
variable fileB_PRODUCT_6;
file fileB;
variable Method;
variable file1_MasterMix;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslFalse);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 1);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    file1.AddField("MasterMix", file1_MasterMix, hslString, file1_MasterMix);
    if( 0 == file1.Open("D:\\phuongDongServiceSoftware\\dev_app\\main_v2\\input.xls" + " " + "Master$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "D:\\phuongDongServiceSoftware\\dev_app\\main_v2\\input.xls", "HxMetEdCompCmd");
    }
    {
      loopCounter3 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter3 = loopCounter3 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Method = file1_MasterMix;
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    fileB.AddField("No#", fileB_No_, hslInteger);
    fileB.AddField("Urine", fileB_Urine, hslString, 255);
    fileB.AddField("Barcode", fileB_Barcode, hslString, 255);
    fileB.AddField("Product1", fileB_PRODUCT_1, hslString, 255);
    fileB.AddField("Product2", fileB_PRODUCT_2, hslString, 255);
    fileB.AddField("Product3", fileB_PRODUCT_3, hslString, 255);
    fileB.AddField("Product4", fileB_PRODUCT_4, hslString, 255);
    fileB.AddField("Product5", fileB_PRODUCT_5, hslString, 255);
    fileB.AddField("Product6", fileB_PRODUCT_6, hslString, 255);
    fileB.AddField("Product7", fileB_PRODUCT_7, hslString, 255);
    fileB.AddField("Product8", fileB_PRODUCT_8, hslString, 255);
    fileB.AddField("Product9", fileB_PRODUCT_9, hslString, 255);
    fileB.AddField("Product10", fileB_PRODUCT_10, hslString, 255);
    fileB.AddField("Product11", fileB_PRODUCT_11, hslString, 255);
    fileB.AddField("Product12", fileB_PRODUCT_12, hslString, 255);
    fileB.AddField("1_5ml", fileB_1_5ml, hslString, 255);
    fileB.AddField("12mm", fileB_12mm, hslString, 255);
    fileB.AddField("16mm", fileB_16mm, hslString, 255);
    fileB.AddField("Thinprep", fileB_Thinprep, hslString, 255);
    if( 0 == fileB.Open("C:\\Seegene_Method_Setting\\STARlet.xls" + " " + "WorkList$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Seegene_Method_Setting\\STARlet.xls", "HxMetEdCompCmd");
    }
    {
      loopCounter5 = 0;
      while (
         (fileB.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == fileB.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Sample_Cnt_Flag = 0;
        if (fileB_PRODUCT_1 == "true")
        {
          Sample_Cnt_PRODUCT_001 = Sample_Cnt_PRODUCT_001 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_2 == "true")
        {
          Sample_Cnt_PRODUCT_002 = Sample_Cnt_PRODUCT_002 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_3 == "true")
        {
          Sample_Cnt_PRODUCT_003 = Sample_Cnt_PRODUCT_003 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_4 == "true")
        {
          Sample_Cnt_PRODUCT_004 = Sample_Cnt_PRODUCT_004 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_5 == "true")
        {
          Sample_Cnt_PRODUCT_005 = Sample_Cnt_PRODUCT_005 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_6 == "true")
        {
          Sample_Cnt_PRODUCT_006 = Sample_Cnt_PRODUCT_006 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_7 == "true")
        {
          Sample_Cnt_PRODUCT_007 = Sample_Cnt_PRODUCT_007 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_8 == "true")
        {
          Sample_Cnt_PRODUCT_008 = Sample_Cnt_PRODUCT_008 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_9 == "true")
        {
          Sample_Cnt_PRODUCT_009 = Sample_Cnt_PRODUCT_009 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_10 == "true")
        {
          Sample_Cnt_PRODUCT_010 = Sample_Cnt_PRODUCT_010 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_11 == "true")
        {
          Sample_Cnt_PRODUCT_011 = Sample_Cnt_PRODUCT_011 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (fileB_PRODUCT_12 == "true")
        {
          Sample_Cnt_PRODUCT_012 = Sample_Cnt_PRODUCT_012 + 1;
          Sample_Cnt_Flag = Sample_Cnt_Flag + 1;
        }
        if (Sample_Cnt_Flag != 0)
        {
          Sample_Cnt = Sample_Cnt + 1;
        }
      }
    }
    if( 0 != fileB.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    fileB.RemoveFields();
    intNumberOfSample = Sample_Cnt;
    all_tips_1000ul_full_counter = Translate("0");
    TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, all_tips_1000ul_full_counter, ML_STAR, 300);
    all_tips_300ul_full_counter = Translate("0");
    TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, all_tips_300ul_full_counter, ML_STAR, 300);
    #include "Barcode.hsl"; // include the Barcode Library Barcode barcode;
    // declare a barcode variable
    barcode = BarcodeCreate(); // initialize the barcode variable
    string barcode1, barcode2; // declare string variables for barcodes
    barcode1 = BarcodeGenerate(barcode); // generate a unique barcode for the first sample carrier
    barcode2 = BarcodeGenerate(barcode); // generate a unique barcode for the second sample carrier
    BarcodeSet(barcode, "SMP_CAR_32_12x100_A00_0001", barcode1); // assign the barcode to the first sample carrier ID
    BarcodeSet(barcode, "SMP_CAR_32_12x100_A00_0002", barcode2); // assign the barcode to the second sample carrier ID
    BarcodeDestroy(barcode); // destroy the barcode variable
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    if (intNumberOfSample > 64)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    else
    {
      if (intNumberOfSample > 32)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      else
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
    }
    if (Method == "HIV")
    {
      HIV_masterMix(ML_STAR, ML_STAR.DWP96_Magnet, ML_STAR.HIV_PCR3_IC, ML_STAR.HIV_PCR1_masterMix_A, ML_STAR.HIV_PCR3_QS_all, ML_STAR.HIV_PCR3_water, ML_STAR.HIV_PCR1_masterMix_B, ML_STAR.White_Strip_0001, intNumberOfSample);
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, all_tips_1000ul_full_counter, ML_STAR);
    TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, all_tips_300ul_full_counter, ML_STAR);
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  } }
