private function HBV_masterMix( variable intNumberOfSample, device & ML_STAR, sequence HBV_PCR3_IC, sequence HBV_PCR3_masterMix, sequence HBV_PCR3_QS_all, sequence HBV_PCR3_water, sequence White_Strip_0001, sequence & DW96_Magnet ) void ;
private function HBV_masterMix_aspirate( sequence HBV_masterMix_1, sequence HBV_masterMix_2, device & ML_STAR ) void ;
function HIV_masterMix( device & ML_STAR, sequence DW96_Magnet, sequence HIV_PCR3_IC, sequence HIV_PCR1_masterMix_A, sequence HIV_PCR3_QS_all, sequence HIV_PCR3_water, sequence HIV_PCR1_masterMix_B, sequence White_Strip_0001, variable intNumberOfSample ) void ;
private function MasterMix_dispense_eject( device & ML_STAR, variable intVolumeMasterMix_default, variable intSampleEndPosition, variable stringPipetteVariable ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function HBV_masterMix( variable intNumberOfSample, device & ML_STAR, sequence HBV_PCR3_IC, sequence HBV_PCR3_masterMix, sequence HBV_PCR3_QS_all, sequence HBV_PCR3_water, sequence White_Strip_0001, sequence & DW96_Magnet ) void {
  private variable stringPipetteVariable;
  private variable intVolumeWater_default;
  private variable intVolumeMastermix_default;
  private variable intVolumeSample_default;
  private variable intVolumeIC_default;
  private variable intVolumeQS_default;
  private variable intCurrentPosition;
  private variable intVolumeMasterMIx_default;
  private variable intVolumeMasterMix_aspirate;
  private variable intVolumeMasterMix_aspirate_temp;
  private variable loopCounter_DW96_masterMix;
  private variable intSampleEndPosition;
  private variable intVolumeIC_aspirate;
  private variable loopCounter2;
  private variable intEndPosition_QS;
  private variable intEndPosition_sample_1;
  private variable i;
  private variable loopCounter1;
  private variable intCurrentPosition_sample;
  intVolumeMastermix_default = 30;
  intVolumeQS_default = 20;
  intVolumeSample_default = 20;
  intVolumeWater_default = 20;
  intVolumeIC_default = 2;
  stringPipetteVariable = Translate("");
  if(0){
    intSampleEndPosition = intNumberOfSample + 6;
    intVolumeMasterMix_aspirate = intVolumeMasterMIx_default * intSampleEndPosition;
    if (intSampleEndPosition > 66)
    {
      stringPipetteVariable = Translate("11100000");
      intVolumeMasterMix_aspirate_temp = intVolumeMasterMix_aspirate / 3;
      intVolumeMasterMix_aspirate = intVolumeMasterMix_aspirate_temp + 20;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    }
    else
    {
      if (intSampleEndPosition > 30)
      {
        stringPipetteVariable = Translate("11000000");
        intVolumeMasterMix_aspirate_temp = intVolumeMasterMix_aspirate / 2;
        intVolumeMasterMix_aspirate = intVolumeMasterMix_aspirate_temp + 15;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      }
      else
      {
        stringPipetteVariable = Translate("10000000");
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      }
    }
    {
      loopCounter_DW96_masterMix = 0;
      White_Strip_0001.SetCurrentPosition(1);
      while (
         (White_Strip_0001.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, White_Strip_0001, 1);
        loopCounter_DW96_masterMix = loopCounter_DW96_masterMix + 1;
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        intCurrentPosition = White_Strip_0001.GetCurrentPosition();
        if (intCurrentPosition > intSampleEndPosition)
        {
          MECC::TraceComment(Translate("loop break"));
          break;
        }
        if (
           (White_Strip_0001.GetCurrentPosition() > 0 && White_Strip_0001.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      White_Strip_0001.SetMax(White_Strip_0001.GetTotal());
      White_Strip_0001.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  HBV_masterMix_aspirate(ML_STAR.HBV_masterMix_1, ML_STAR.HBV_masterMix_2, ML_STAR);
  MECC::TraceComment(Translate("IC dispense exclude sample"));
  intVolumeIC_aspirate = intVolumeIC_default * 6;
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  {
    loopCounter2 = 0;
    White_Strip_0001.SetCurrentPosition(1);
    while (
       (White_Strip_0001.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, White_Strip_0001, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      if (loopCounter2 == 6)
      {
        break;
      }
      if (
         (White_Strip_0001.GetCurrentPosition() > 0 && White_Strip_0001.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    White_Strip_0001.SetMax(White_Strip_0001.GetTotal());
    White_Strip_0001.SetCurrentPosition(1);
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  MECC::TraceComment(Translate("QS* dispensing"));
  intEndPosition_QS = 5;
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  MECC::TraceComment(Translate("water NTC dispensing"));
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  if(0){
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }
  MECC::TraceComment(Translate("Sample dispensing"));
  i = 0;
  intEndPosition_sample_1 = 1;
  //find pipette varaiable
  i=intNumberOfSample%8;
  intEndPosition_sample_1=intNumberOfSample-i;
  {
    loopCounter1 = 0;
    while (
       (ML_STAR.DWP96_Magnet.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.DWP96_Magnet, 1);
      loopCounter1 = loopCounter1 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      intCurrentPosition_sample = ML_STAR.DWP96_Magnet.GetCurrentPosition();
      if (intCurrentPosition_sample > intEndPosition_sample_1)
      {
        MECC::TraceComment(Translate("loop break"));
        break;
      }
      if (
         (ML_STAR.DWP96_Magnet.GetCurrentPosition() > 0 && ML_STAR.DWP96_Magnet.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.DWP96_Magnet.SetMax(ML_STAR.DWP96_Magnet.GetTotal());
  }
  if(i==7){stringPipetteVariable="11111110";}
  if(i==6){stringPipetteVariable="11111100";}
  if(i==5){stringPipetteVariable="11111000";}
  if(i==4){stringPipetteVariable="11110000";}
  if(i==3){stringPipetteVariable="11100000";}
  if(i==2){stringPipetteVariable="11000000";}
  if(i==1){stringPipetteVariable="10000000";}
  {
    loopCounter1 = 0;
    while (
       (ML_STAR.DWP96_Magnet.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.DWP96_Magnet, 1);
      loopCounter1 = loopCounter1 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      intCurrentPosition_sample = ML_STAR.DWP96_Magnet.GetCurrentPosition();
      if (intCurrentPosition_sample > intNumberOfSample)
      {
        MECC::TraceComment(Translate("loop break"));
        break;
      }
      if (
         (ML_STAR.DWP96_Magnet.GetCurrentPosition() > 0 && ML_STAR.DWP96_Magnet.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.DWP96_Magnet.SetMax(ML_STAR.DWP96_Magnet.GetTotal());
    ML_STAR.DWP96_Magnet.SetCurrentPosition(1);
  }
}

private function HBV_masterMix_aspirate( sequence HBV_masterMix_1, sequence HBV_masterMix_2, device & ML_STAR ) void {
  private variable stringPipetteVariable;
  private variable intVolumeMasterMix_aspirate;
  private variable intVolumeMasterMix_default;
  private variable intSampleEndPosition;
  private variable intRemainSample;
  intVolumeMasterMix_default = 30;
  stringPipetteVariable = Translate("");
  intSampleEndPosition = intNumberOfSample + 6;
  stringPipetteVariable = Translate("10000000");
  if (intSampleEndPosition < 50)
  {
    if (intSampleEndPosition <= 33)
    {
      intVolumeMasterMix_aspirate = intVolumeMasterMix_default * intSampleEndPosition;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      MECC::TraceComment(Translate("change MasterMix sequnces to MasterMix_1 sequences"));
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      MasterMix_dispense_eject(ML_STAR, intVolumeMasterMix_default, intSampleEndPosition, stringPipetteVariable);
    }
    else
    {
      intSampleEndPosition = 33;
      intVolumeMasterMix_aspirate = intVolumeMasterMix_default * intSampleEndPosition;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      MECC::TraceComment(Translate("change MasterMix sequnces to MasterMix_1 sequences"));
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      MasterMix_dispense_eject(ML_STAR, intVolumeMasterMix_default, intSampleEndPosition, stringPipetteVariable);
      intSampleEndPosition = intNumberOfSample + 6;
      intRemainSample = intSampleEndPosition - 33;
      intSampleEndPosition = intRemainSample;
      intVolumeMasterMix_aspirate = intVolumeMasterMix_default * intSampleEndPosition;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      MECC::TraceComment(Translate("change MasterMix sequnces to MasterMix_1 sequences to aspirate remain volume in tube 1"));
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      MasterMix_dispense_eject(ML_STAR, intVolumeMasterMix_default, intSampleEndPosition, stringPipetteVariable);
    }
  }
  else
  {
    intSampleEndPosition = 33;
    intVolumeMasterMix_aspirate = intVolumeMasterMix_default * intSampleEndPosition;
    intVolumeMasterMix_aspirate = intVolumeMasterMix_default * intSampleEndPosition;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    MECC::TraceComment(Translate("change MasterMix sequnces to MasterMix_1 sequences"));
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    MasterMix_dispense_eject(ML_STAR, intVolumeMasterMix_default, intSampleEndPosition, stringPipetteVariable);
    intSampleEndPosition = 17;
    intVolumeMasterMix_aspirate = intVolumeMasterMix_default * intSampleEndPosition;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    MECC::TraceComment(Translate("change MasterMix sequnces to MasterMix_1 sequences to aspirate remain volume in tube 1"));
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    MasterMix_dispense_eject(ML_STAR, intVolumeMasterMix_default, intSampleEndPosition, stringPipetteVariable);
    intSampleEndPosition = intNumberOfSample + 6;
    intRemainSample = intSampleEndPosition - 50;
    intSampleEndPosition = intRemainSample;
    intVolumeMasterMix_aspirate = intVolumeMasterMix_default * intSampleEndPosition;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    MECC::TraceComment(Translate("change MasterMix sequnces to MasterMix_2 sequences to aspirate remain volume in tube 2"));
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    MasterMix_dispense_eject(ML_STAR, intVolumeMasterMix_default, intSampleEndPosition, stringPipetteVariable);
  }
}

private function MasterMix_dispense_eject( device & ML_STAR, variable intVolumeMasterMix_default, variable intSampleEndPosition, variable stringPipetteVariable ) void {
  private variable intCurrentPosition;
  private variable loopCounter_DW96_masterMix;
  if(0){
    intVolumeMasterMix_default = 30;
    stringPipetteVariable = Translate("10000000");
  }
  {
    loopCounter_DW96_masterMix = 0;
    while (
       (ML_STAR.White_Strip_0001.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.White_Strip_0001, 1);
      loopCounter_DW96_masterMix = loopCounter_DW96_masterMix + 1;
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      intCurrentPosition = ML_STAR.White_Strip_0001.GetCurrentPosition();
      if (intCurrentPosition > intSampleEndPosition)
      {
        MECC::TraceComment(Translate("loop break"));
        break;
      }
      if (
         (ML_STAR.White_Strip_0001.GetCurrentPosition() > 0 && ML_STAR.White_Strip_0001.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.White_Strip_0001.SetMax(ML_STAR.White_Strip_0001.GetTotal());
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
}

function HIV_masterMix( device & ML_STAR, sequence DW96_Magnet, sequence HIV_PCR3_IC, sequence HIV_PCR1_masterMix_A, sequence HIV_PCR3_QS_all, sequence HIV_PCR3_water, sequence HIV_PCR1_masterMix_B, sequence White_Strip_0001, variable intNumberOfSample ) void {
  private variable loopCounter7;
  private variable intVolume_water;
  private variable intVolume_MasterMix_A_aspirate;
  private variable intEndPosition_sample_1;
  private variable loopCounter8;
  private variable breakPoint;
  private variable loopCounter9;
  private variable i;
  private variable intVolume_IC_aspirate;
  private variable stringPipetteVariable;
  private variable intVolume_MasterMix_B_aspirate;
  private variable intSampleEndPosition_1;
  private variable intVolume_IC;
  private variable intEndPosition_QS;
  private variable loopCounter1;
  private variable intCurrentPosition_sample;
  private variable loopCounter2;
  private variable intVolume_sample;
  private variable intVolume_masterMix_A;
  private variable intSampleEndPosition;
  private variable intVolume_masterMix_B;
  private variable loopCounter4;
  private variable intVolume_QS;
  private variable loopCounter6;
  intVolume_masterMix_A = 12;
  intVolume_masterMix_B = 18;
  intVolume_sample = 20;
  intVolume_IC = 2;
  intVolume_QS = 20;
  intVolume_water = 20;
  stringPipetteVariable = Translate("");
  breakPoint = 24;
  intSampleEndPosition = intNumberOfSample + 5;
  if (intSampleEndPosition > breakPoint)
  {
    stringPipetteVariable = Translate("10000000");
    intVolume_MasterMix_A_aspirate = intVolume_masterMix_A * breakPoint;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    {
      loopCounter1 = 0;
      ML_STAR.White_Strip_0001.SetCurrentPosition(1);
      while (
         (ML_STAR.White_Strip_0001.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.White_Strip_0001, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (loopCounter1 == breakPoint)
        {
          break;
        }
        if (
           (ML_STAR.White_Strip_0001.GetCurrentPosition() > 0 && ML_STAR.White_Strip_0001.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.White_Strip_0001.SetMax(ML_STAR.White_Strip_0001.GetTotal());
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    intSampleEndPosition_1 = intSampleEndPosition - breakPoint;
    intVolume_MasterMix_A_aspirate = intVolume_masterMix_A * intSampleEndPosition_1;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    {
      loopCounter2 = 0;
      while (
         (White_Strip_0001.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, White_Strip_0001, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (loopCounter2 == intSampleEndPosition_1)
        {
          break;
        }
        if (
           (White_Strip_0001.GetCurrentPosition() > 0 && White_Strip_0001.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      White_Strip_0001.SetMax(White_Strip_0001.GetTotal());
      White_Strip_0001.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  if (intSampleEndPosition <= breakPoint)
  {
    stringPipetteVariable = Translate("10000000");
    intVolume_MasterMix_A_aspirate = intVolume_masterMix_A * intSampleEndPosition;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    {
      loopCounter4 = 0;
      while (
         (White_Strip_0001.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, White_Strip_0001, 1);
        loopCounter4 = loopCounter4 + 1;
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (loopCounter4 == intSampleEndPosition)
        {
          break;
        }
        if (
           (White_Strip_0001.GetCurrentPosition() > 0 && White_Strip_0001.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      White_Strip_0001.SetMax(White_Strip_0001.GetTotal());
      White_Strip_0001.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  MECC::TraceComment(Translate("master mix A done"));
  intSampleEndPosition = intNumberOfSample + 5;
  if (intSampleEndPosition > breakPoint)
  {
    stringPipetteVariable = Translate("10000000");
    intVolume_MasterMix_B_aspirate = intVolume_masterMix_B * breakPoint;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    {
      loopCounter5 = 0;
      while (
         (White_Strip_0001.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, White_Strip_0001, 1);
        loopCounter5 = loopCounter5 + 1;
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (loopCounter5 == breakPoint)
        {
          break;
        }
        if (
           (White_Strip_0001.GetCurrentPosition() > 0 && White_Strip_0001.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      White_Strip_0001.SetMax(White_Strip_0001.GetTotal());
      White_Strip_0001.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    intSampleEndPosition_1 = intSampleEndPosition - breakPoint;
    intVolume_MasterMix_B_aspirate = intVolume_masterMix_B * intSampleEndPosition_1;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    {
      loopCounter6 = 0;
      while (
         (White_Strip_0001.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, White_Strip_0001, 1);
        loopCounter6 = loopCounter6 + 1;
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (loopCounter6 == intSampleEndPosition_1)
        {
          break;
        }
        if (
           (White_Strip_0001.GetCurrentPosition() > 0 && White_Strip_0001.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      White_Strip_0001.SetMax(White_Strip_0001.GetTotal());
      White_Strip_0001.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  if (intSampleEndPosition <= breakPoint)
  {
    stringPipetteVariable = Translate("10000000");
    intVolume_MasterMix_B_aspirate = intVolume_masterMix_B * intSampleEndPosition;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    {
      loopCounter7 = 0;
      while (
         (White_Strip_0001.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, White_Strip_0001, 1);
        loopCounter7 = loopCounter7 + 1;
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (loopCounter7 == intSampleEndPosition)
        {
          break;
        }
        if (
           (White_Strip_0001.GetCurrentPosition() > 0 && White_Strip_0001.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      White_Strip_0001.SetMax(White_Strip_0001.GetTotal());
      White_Strip_0001.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  MECC::TraceComment(Translate("master mix B done"));
  intVolume_IC_aspirate = intVolume_IC * 5;
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  {
    loopCounter8 = 0;
    White_Strip_0001.SetCurrentPosition(1);
    while (
       (White_Strip_0001.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, White_Strip_0001, 1);
      loopCounter8 = loopCounter8 + 1;
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      if (loopCounter8 == 5)
      {
        break;
      }
      if (
         (White_Strip_0001.GetCurrentPosition() > 0 && White_Strip_0001.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    White_Strip_0001.SetMax(White_Strip_0001.GetTotal());
    White_Strip_0001.SetCurrentPosition(1);
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  intEndPosition_QS = 4;
  stringPipetteVariable = Translate("11110000");
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  {
    loopCounter9 = 0;
    White_Strip_0001.SetCurrentPosition(1);
    while (
       (White_Strip_0001.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, White_Strip_0001, 1);
      loopCounter9 = loopCounter9 + 1;
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      break;
      if (
         (White_Strip_0001.GetCurrentPosition() > 0 && White_Strip_0001.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    White_Strip_0001.SetMax(White_Strip_0001.GetTotal());
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  stringPipetteVariable = Translate("10000000");
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  i = 0;
  intEndPosition_sample_1 = 1;
  //find pipette varaiable
  // +5 in end position sample becuase of using same sequence
  i=intNumberOfSample%8;
  intEndPosition_sample_1=intNumberOfSample-i+5;
  if (intNumberOfSample < 8)
  {
    if(i==7){stringPipetteVariable="11111110";}
    if(i==6){stringPipetteVariable="11111100";}
    if(i==5){stringPipetteVariable="11111000";}
    if(i==4){stringPipetteVariable="11110000";}
    if(i==3){stringPipetteVariable="11100000";}
    if(i==2){stringPipetteVariable="11000000";}
    if(i==1){stringPipetteVariable="10000000";}
    {
      loopCounter9 = 0;
      while (
         (ML_STAR.DWP96_Magnet.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.DWP96_Magnet, 1);
        loopCounter9 = loopCounter9 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        intCurrentPosition_sample = DW96_Magnet.GetCurrentPosition();
        if (intCurrentPosition_sample > intEndPosition_sample_1)
        {
          MECC::TraceComment(Translate("loop break"));
          break;
        }
        if (
           (ML_STAR.DWP96_Magnet.GetCurrentPosition() > 0 && ML_STAR.DWP96_Magnet.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.DWP96_Magnet.SetMax(ML_STAR.DWP96_Magnet.GetTotal());
      ML_STAR.DWP96_Magnet.SetCurrentPosition(1);
    }
  }
  else
  {
    {
      loopCounter9 = 0;
      while (
         (DW96_Magnet.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, DW96_Magnet, 1);
        loopCounter9 = loopCounter9 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        intCurrentPosition_sample = ML_STAR.DWP96_Magnet.GetCurrentPosition();
        if (intCurrentPosition_sample > intEndPosition_sample_1)
        {
          MECC::TraceComment(Translate("loop break"));
          break;
        }
        if (
           (DW96_Magnet.GetCurrentPosition() > 0 && DW96_Magnet.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      DW96_Magnet.SetMax(DW96_Magnet.GetTotal());
      DW96_Magnet.SetCurrentPosition(1);
    }
    if (i != 0)
    {
      if(i==7){stringPipetteVariable="11111110";}
      if(i==6){stringPipetteVariable="11111100";}
      if(i==5){stringPipetteVariable="11111000";}
      if(i==4){stringPipetteVariable="11110000";}
      if(i==3){stringPipetteVariable="11100000";}
      if(i==2){stringPipetteVariable="11000000";}
      if(i==1){stringPipetteVariable="10000000";}
      {
        loopCounter9 = 0;
        while (
           (ML_STAR.DWP96_Magnet.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.DWP96_Magnet, 1);
          loopCounter9 = loopCounter9 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          intCurrentPosition_sample = ML_STAR.DWP96_Magnet.GetCurrentPosition();
          if (intCurrentPosition_sample > intEndPosition_sample_1)
          {
            MECC::TraceComment(Translate("loop break"));
            break;
          }
          if (
             (ML_STAR.DWP96_Magnet.GetCurrentPosition() > 0 && ML_STAR.DWP96_Magnet.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.DWP96_Magnet.SetMax(ML_STAR.DWP96_Magnet.GetTotal());
        ML_STAR.DWP96_Magnet.SetCurrentPosition(1);
      }
    }
  }
}
