#include "demo_HBV_masterMix_v3.res"
 namespace _Method { #include "HSLTipCountingLib.hsl" }
variable intNumberOfSample;
variable stringPipetteVariable;
variable intVolumeWater_default;
variable intVolumeMastermix_default;
variable intVolumeSample_default;
variable intVolumeIC_default;
variable intVolumeQS_default;
variable intCurrentPosition;
variable intVolumeMasterMIx_default;
variable intVolumeMasterMix_aspirate;
variable intVolumeMasterMix_aspirate_temp;
variable intVolumeIC_aspirate;
variable loopCounter_DW96_masterMix;
variable loopCounter2;
variable intSampleEndPosition;
variable initVolumeQS_default;
variable intVoumeIC_default;
variable i;
variable intEndPosition_sample_1;
variable intCurrentPosition_sample;
variable loopCounter1;
global device ML_STAR ("demo_HBV_masterMix_v3.lay", "ML_STAR", hslTrue);
variable all_tips_1000ul_full_counter;
dialog dialogHandle_1;
variable loopCounter3;
variable file1_No_Sample;
file file1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslFalse);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 1);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    file1.AddField("No#Sample", file1_No_Sample, hslFloat);
    if( 0 == file1.Open("C:\\Users\\Admin\\OneDrive - CONG TY TNHH THIET BI Y TE PHUONG DONG\\Desktop\\input.xls" + " " + "Master$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Users\\Admin\\OneDrive - CONG TY TNHH THIET BI Y TE PHUONG DONG\\Desktop\\input.xls", "HxMetEdCompCmd");
    }
    {
      loopCounter3 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter3 = loopCounter3 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        intNumberOfSample = file1_No_Sample;
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    if(0){
      dialogHandle_1.SetInputSize(1);
      dialogHandle_1.SetInputField(0, Translate("Number of sample"), hslInteger, 1, 1, 72);
      dialogHandle_1.ShowInput(Translate("Number of sample"), hslInfinite, hslOKOnly | hslDefButton1);
      intNumberOfSample = dialogHandle_1.GetInputField(0);
    }
    intVolumeMastermix_default = 30;
    intVolumeQS_default = 20;
    intVolumeSample_default = 20;
    intVolumeWater_default = 20;
    intVolumeIC_default = 2;
    stringPipetteVariable = Translate("");
    all_tips_1000ul_full_counter = Translate("0");
    TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, all_tips_1000ul_full_counter, ML_STAR, 300);
    //{
    	variable arrRetValues[];
    	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  intSampleEndPosition = intNumberOfSample + 6;
  intVolumeMasterMix_aspirate = intVolumeMasterMIx_default * intSampleEndPosition;
  if (intSampleEndPosition > 66)
  {
    stringPipetteVariable = Translate("11100000");
    intVolumeMasterMix_aspirate_temp = intVolumeMasterMix_aspirate / 3;
    intVolumeMasterMix_aspirate = intVolumeMasterMix_aspirate_temp + 20;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  }
  else
  {
    if (intSampleEndPosition > 30)
    {
      stringPipetteVariable = Translate("11000000");
      intVolumeMasterMix_aspirate_temp = intVolumeMasterMix_aspirate / 2;
      intVolumeMasterMix_aspirate = intVolumeMasterMix_aspirate_temp + 15;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    }
    else
    {
      stringPipetteVariable = Translate("10000000");
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    }
  }
  {
    loopCounter_DW96_masterMix = 0;
    while (
       (ML_STAR.demo_whiteStrip_all.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.demo_whiteStrip_all, 1);
      loopCounter_DW96_masterMix = loopCounter_DW96_masterMix + 1;
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      intCurrentPosition = ML_STAR.demo_whiteStrip_all.GetCurrentPosition();
      if (intCurrentPosition > intSampleEndPosition)
      {
        MECC::TraceComment(Translate("loop break"));
        break;
      }
      if (
         (ML_STAR.demo_whiteStrip_all.GetCurrentPosition() > 0 && ML_STAR.demo_whiteStrip_all.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.demo_whiteStrip_all.SetMax(ML_STAR.demo_whiteStrip_all.GetTotal());
    ML_STAR.demo_whiteStrip_all.SetCurrentPosition(1);
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  intVolumeIC_aspirate = intVoumeIC_default * 6;
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  {
    loopCounter2 = 0;
    while (
       (ML_STAR.demo_whiteStrip_IC.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.demo_whiteStrip_IC, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      if (
         (ML_STAR.demo_whiteStrip_IC.GetCurrentPosition() > 0 && ML_STAR.demo_whiteStrip_IC.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.demo_whiteStrip_IC.SetMax(ML_STAR.demo_whiteStrip_IC.GetTotal());
    ML_STAR.demo_whiteStrip_IC.SetCurrentPosition(1);
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  i = 0;
  intEndPosition_sample_1 = 1;
  //find pipette varaiable
  i=intNumberOfSample%8;
  intEndPosition_sample_1=intNumberOfSample-i;
  {
    loopCounter1 = 0;
    while (
       (ML_STAR.demo_DW96_samples.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.demo_DW96_samples, 1);
      loopCounter1 = loopCounter1 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      intCurrentPosition_sample = ML_STAR.demo_DW96_samples.GetCurrentPosition();
      if (intCurrentPosition_sample > intEndPosition_sample_1)
      {
        MECC::TraceComment(Translate("loop break"));
        break;
      }
      if (
         (ML_STAR.demo_DW96_samples.GetCurrentPosition() > 0 && ML_STAR.demo_DW96_samples.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.demo_DW96_samples.SetMax(ML_STAR.demo_DW96_samples.GetTotal());
  }
  if(i==7){stringPipetteVariable="11111110";}
  if(i==6){stringPipetteVariable="11111100";}
  if(i==5){stringPipetteVariable="11111000";}
  if(i==4){stringPipetteVariable="11110000";}
  if(i==3){stringPipetteVariable="11100000";}
  if(i==2){stringPipetteVariable="11000000";}
  if(i==1){stringPipetteVariable="10000000";}
  {
    loopCounter1 = 0;
    while (
       (ML_STAR.demo_DW96_samples.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.demo_DW96_samples, 1);
      loopCounter1 = loopCounter1 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      intCurrentPosition_sample = ML_STAR.demo_DW96_samples.GetCurrentPosition();
      if (intCurrentPosition_sample > intNumberOfSample)
      {
        MECC::TraceComment(Translate("loop break"));
        break;
      }
      if (
         (ML_STAR.demo_DW96_samples.GetCurrentPosition() > 0 && ML_STAR.demo_DW96_samples.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.demo_DW96_samples.SetMax(ML_STAR.demo_DW96_samples.GetTotal());
    ML_STAR.demo_DW96_samples.SetCurrentPosition(1);
  }
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter_Full, all_tips_1000ul_full_counter, ML_STAR);
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
} }
