#include "Basic_Deck.res"
global device ML_STAR ("Basic_Deck.lay", "ML_STAR", hslTrue);
dialog dialogHandle_1;
dialog dialogHandle_2;
dialog dialogHandle_3;
dialog dialogHandle1;
variable intAspirateVolume;
variable Notificagtion;
variable loopCounter1;
variable complete;
dialog dialogHandle_4;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslFalse);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 1);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    intAspirateVolume = 50 * 14;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Nun_96_Fl_Lb_0001.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Nun_96_Fl_Lb_0001, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (ML_STAR.Nun_96_Fl_Lb_0001.GetCurrentPosition() > 0 && ML_STAR.Nun_96_Fl_Lb_0001.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Nun_96_Fl_Lb_0001.SetMax(ML_STAR.Nun_96_Fl_Lb_0001.GetTotal());
      ML_STAR.Nun_96_Fl_Lb_0001.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    dialogHandle_4.SetOutput(Translate("complete"), intAspirateVolume);
    dialogHandle_4.ShowOutput(Translate("Notificagtion"), hslOKOnly | hslInformation | hslDefButton1, 15);
  } }
